def model atrialmyofibroblast as

  def comp cell as
    var B: dimensionless;
    var Ca_c: dimensionless;
    var Ca_d: dimensionless {init: 7.1e-05};
    var Ca_i: dimensionless {init: 6.5e-05};
    var Ca_o: dimensionless {init: 1.8};
    var Ca_rel: dimensionless {init: 0.632613};
    var Ca_up: dimensionless {init: 0.649195};
    var Cm: dimensionless {init: 6.3};
    var E_Ca: dimensionless;
    var E_Ca_app: dimensionless {init: 60.0};
    var E_K: dimensionless;
    var E_Na: dimensionless;
    var Eca_app: dimensionless {init: 60.0};
    var F: dimensionless {init: 96487.0};
    var F1: dimensionless {init: 0.470055};
    var F2: dimensionless {init: 0.002814};
    var IK1: dimensionless;
    var IKv: dimensionless;
    var INKA: dimensionless;
    var INa: dimensionless;
    var INab: dimensionless;
    var I_stim: dimensionless {interface: public};
    var I_up_max: dimensionless {init: 2800.0};
    var Iion: dimensionless;
    var J_O: dimensionless;
    var J_O_C: dimensionless;
    var J_O_Calse: dimensionless;
    var J_O_TC: dimensionless;
    var J_O_TMgC: dimensionless;
    var J_O_TMgMg: dimensionless;
    var K_NaCa: dimensionless {init: 0.0374842};
    var K_i: dimensionless {init: 124.4059};
    var K_mK: dimensionless {init: 1.0};
    var K_mNa: dimensionless {init: 11.0};
    var K_o: dimensionless {init: 5.3581};
    var Mg_i: dimensionless {init: 2.5};
    var Na_h_Vhalf: dimensionless {init: 64.7};
    var Na_h_hill: dimensionless {init: 6.9};
    var Na_i: dimensionless {init: 13.3789};
    var Na_m_Vhalf: dimensionless {init: 29.9};
    var Na_m_hill: dimensionless;
    var Na_o: dimensionless {init: 130.011};
    var O_C: dimensionless {init: 0.026766};
    var O_Calse: dimensionless {init: 0.431547};
    var O_TC: dimensionless {init: 0.012922};
    var O_TMgC: dimensionless {init: 0.190369};
    var O_TMgMg: dimensionless {init: 0.714463};
    var P_Na: dimensionless {init: 2.25e-05};
    var R: dimensionless {init: 8314.0};
    var T: dimensionless {init: 306.15};
    var V_rev: dimensionless;
    var Vm: dimensionless {init: -26.7096};
    var Vol_d: dimensionless {init: 1.17679999999999998e-04};
    var Vol_i: dimensionless {init: 0.00137};
    var Vol_rel: dimensionless {init: 4.41e-05};
    var Vol_up: dimensionless {init: 0.0003969};
    var alpha_rel: dimensionless {init: 200000.0};
    var d_L: dimensionless {init: 0.0};
    var d_L_factor: dimensionless;
    var d_L_infinity: dimensionless;
    var d_NaCa: dimensionless {init: 0.0003};
    var diff_Ca_d: dimensionless;
    var diff_Ca_i: dimensionless;
    var diff_Ca_rel: dimensionless;
    var diff_Ca_up: dimensionless;
    var diff_F1: dimensionless;
    var diff_F2: dimensionless;
    var diff_K_i: dimensionless;
    var diff_Na_i: dimensionless;
    var diff_O_C: dimensionless;
    var diff_O_Calse: dimensionless;
    var diff_O_TC: dimensionless;
    var diff_O_TMgC: dimensionless;
    var diff_O_TMgMg: dimensionless;
    var diff_f_L1: dimensionless;
    var diff_f_L2: dimensionless;
    var diff_h1: dimensionless;
    var diff_h2: dimensionless;
    var f_Ca: dimensionless;
    var f_L1: dimensionless {init: 0.998597};
    var f_L2: dimensionless {init: 0.998586};
    var f_L_factor: dimensionless;
    var f_L_infinity: dimensionless;
    var g_B_Ca: dimensionless {init: 0.078681};
    var g_Ca_L: dimensionless {init: 6.75};
    var g_K1: dimensionless;
    var g_Kv: dimensionless;
    var g_NKA: dimensionless;
    var g_Nab: dimensionless;
    var gamma_Na: dimensionless {init: 0.45};
    var h1: dimensionless {init: 0.0157};
    var h2: dimensionless {init: 0.0157};
    var h_inf: dimensionless;
    var i_B_Ca: dimensionless;
    var i_CaP: dimensionless;
    var i_CaP_max: dimensionless {init: 4.0};
    var i_Ca_L: dimensionless;
    var i_NaCa: dimensionless;
    var i_di: dimensionless;
    var i_rel: dimensionless;
    var i_rel_f2: dimensionless;
    var i_rel_factor: dimensionless;
    var i_tr: dimensionless;
    var i_up: dimensionless;
    var k_Ca: dimensionless {init: 0.025};
    var k_CaP: dimensionless {init: 0.0002};
    var k_cyca: dimensionless {init: 0.0003};
    var k_rel_d: dimensionless {init: 0.003};
    var k_rel_i: dimensionless {init: 0.0003};
    var k_srca: dimensionless {init: 0.5};
    var k_xcs: dimensionless {init: 0.4};
    var m: dimensionless {init: 0.3163};
    var m_inf: dimensionless;
    var q10IK1: dimensionless {init: 1.4};
    var q10NKA: dimensionless {init: 1.63};
    var q10PNa: dimensionless {init: 1.45};
    var q10exp: dimensionless;
    var q10tauNa: dimensionless {init: 3.0};
    var r: dimensionless {init: 0.2614};
    var r_Ca_d_factor: dimensionless;
    var r_Ca_d_term: dimensionless;
    var r_Ca_i_factor: dimensionless;
    var r_Ca_i_term: dimensionless;
    var r_act: dimensionless;
    var r_inact: dimensionless;
    var r_inf: dimensionless;
    var r_recov: dimensionless {init: 0.815};
    var rkv_mod: dimensionless {init: 0.0};
    var rr: dimensionless {init: 0.0};
    var rr_infinity: dimensionless;
    var s: dimensionless {init: 0.7655};
    var s_factor: dimensionless;
    var s_inf: dimensionless;
    var skv_mod: dimensionless {init: 0.0};
    var ss: dimensionless {init: 0.0};
    var ss_infinity: dimensionless;
    var t: dimensionless {interface: public};
    var tau_d_L: dimensionless;
    var tau_di: dimensionless {init: 0.01};
    var tau_f_L1: dimensionless;
    var tau_f_L2: dimensionless;
    var tau_h1: dimensionless;
    var tau_h2: dimensionless;
    var tau_m: dimensionless;
    var tau_r: dimensionless;
    var tau_rr: dimensionless;
    var tau_s: dimensionless;
    var tau_ss: dimensionless;
    var tau_tr: dimensionless {init: 0.01};
    B = -200.0{dimensionless};
    Ca_c = Ca_o;
    ode(Ca_d, t) = diff_Ca_d;
    ode(Ca_i, t) = diff_Ca_i;
    ode(Ca_rel, t) = diff_Ca_rel;
    ode(Ca_up, t) = diff_Ca_up;
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Ca_c/Ca_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Na = R*T/F*ln(Na_o/Na_i);
    ode(F1, t) = diff_F1;
    ode(F2, t) = diff_F2;
    IK1 = pow(q10IK1, q10exp)*g_K1*pow(K_o, 0.4457{dimensionless})*(Vm-E_K)/(1.0{dimensionless}+exp(1.5{dimensionless}*(Vm-E_K+3.6{dimensionless})*F/R/T));
    IKv = g_Kv*r*s*(Vm-E_K);
    INKA = pow(q10NKA, q10exp)*g_NKA*(K_o/(K_o+K_mK))*(pow(Na_i, 1.5{dimensionless})/(pow(Na_i, 1.5{dimensionless})+pow(K_mNa, 1.5{dimensionless})))*(Vm-V_rev)/(Vm-B);
    INa = pow(q10PNa, q10exp)*P_Na*pow(m, 3.0{dimensionless})*(0.9{dimensionless}*h1+0.1{dimensionless}*h2)*Na_o*Vm*sqr(F)/(R*T)*(exp((Vm-E_Na)*F/R/T)-1.0{dimensionless})/(exp(Vm*F/R/T)-1.0{dimensionless});
    INab = g_Nab*(Vm-E_Na);
    Iion = (INa+IKv+IK1+INab+INKA+i_CaP+i_NaCa+i_Ca_L+i_B_Ca)/Cm;
    J_O = 0.08{dimensionless}*J_O_TC+0.16{dimensionless}*J_O_TMgC+0.045{dimensionless}*J_O_C;
    J_O_C = 200000.0{dimensionless}*Ca_i*(1.0{dimensionless}-O_C)-476.0{dimensionless}*O_C;
    J_O_Calse = 480.0{dimensionless}*Ca_rel*(1.0{dimensionless}-O_Calse)-400.0{dimensionless}*O_Calse;
    J_O_TC = 78400.0{dimensionless}*Ca_i*(1.0{dimensionless}-O_TC)-392.0{dimensionless}*O_TC;
    J_O_TMgC = 200000.0{dimensionless}*Ca_i*(1.0{dimensionless}-O_TMgC-O_TMgMg)-6.6{dimensionless}*O_TMgC;
    J_O_TMgMg = 2000.0{dimensionless}*Mg_i*(1.0{dimensionless}-O_TMgC-O_TMgMg)-666.0{dimensionless}*O_TMgMg;
    ode(K_i, t) = diff_K_i;
    ode(Na_i, t) = diff_Na_i;
    Na_m_hill = -3.1{dimensionless};
    ode(O_C, t) = diff_O_C;
    ode(O_Calse, t) = diff_O_Calse;
    ode(O_TC, t) = diff_O_TC;
    ode(O_TMgC, t) = diff_O_TMgC;
    ode(O_TMgMg, t) = diff_O_TMgMg;
    V_rev = -150.0{dimensionless};
    ode(Vm, t) = -Iion-I_stim;
    ode(d_L, t) = (d_L_infinity-d_L)/tau_d_L;
    d_L_factor = (Vm+35.0{dimensionless})/30.0{dimensionless};
    d_L_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm+9.0{dimensionless})/(-5.8{dimensionless})));
    diff_Ca_d = -(i_Ca_L+i_di)/(2.0{dimensionless}*Vol_d*F);
    diff_Ca_i = -(i_B_Ca+i_CaP+i_up-(i_di+i_rel+2.0{dimensionless}*i_NaCa))/(2.0{dimensionless}*Vol_i*F)-1.0{dimensionless}*J_O;
    diff_Ca_rel = (i_tr-i_rel)/(2.0{dimensionless}*Vol_rel*F)-31.0{dimensionless}*J_O_Calse;
    diff_Ca_up = (i_up-i_tr)/(2.0{dimensionless}*Vol_up*F);
    diff_F1 = r_recov*(1.0{dimensionless}-F1-F2)-r_act*F1;
    diff_F2 = r_act*F1-r_inact*F2;
    diff_K_i = -(IK1+IKv-2.0{dimensionless}*INKA)/(Vol_i*F);
    diff_Na_i = -(INa+INab+3.0{dimensionless}*INKA)/(Vol_i*F);
    diff_O_C = J_O_C;
    diff_O_Calse = J_O_Calse;
    diff_O_TC = J_O_TC;
    diff_O_TMgC = J_O_TMgC;
    diff_O_TMgMg = J_O_TMgMg;
    diff_f_L1 = (f_L_infinity-f_L1)/tau_f_L1;
    diff_f_L2 = (f_L_infinity-f_L2)/tau_f_L2;
    diff_h1 = (h_inf-h1)/tau_h1;
    diff_h2 = (h_inf-h2)/tau_h2;
    f_Ca = Ca_d/(Ca_d+k_Ca);
    ode(f_L1, t) = diff_f_L1;
    ode(f_L2, t) = diff_f_L2;
    f_L_factor = Vm+40.0{dimensionless};
    f_L_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm+27.4{dimensionless})/7.1{dimensionless}));
    g_K1 = 0.25{dimensionless}*Cm;
    g_Kv = 0.37{dimensionless}*Cm;
    g_NKA = 5.39{dimensionless}*Cm;
    g_Nab = 0.0217{dimensionless}*Cm;
    ode(h1, t) = diff_h1;
    ode(h2, t) = diff_h2;
    h_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm+Na_h_Vhalf-(4.7{dimensionless}+11.0{dimensionless})/20.0{dimensionless}*(T-294.15{dimensionless}))/Na_h_hill));
    i_B_Ca = g_B_Ca*(Vm-E_Ca);
    i_CaP = i_CaP_max*Ca_i/(Ca_i+k_CaP);
    i_Ca_L = g_Ca_L*d_L*(f_Ca*f_L1+(1.0{dimensionless}-f_Ca)*f_L2)*(Vm-E_Ca_app);
    i_NaCa = K_NaCa*(Na_i*Na_i*Na_i*Ca_c*exp(F*Vm*gamma_Na/(R*T))-Na_o*Na_o*Na_o*Ca_i*exp((gamma_Na-1.0{dimensionless})*Vm*F/(R*T)))/(1.0{dimensionless}+d_NaCa*(Na_o*Na_o*Na_o*Ca_i+Na_i*Na_i*Na_i*Ca_c));
    i_di = (Ca_d-Ca_i)*2.0{dimensionless}*Vol_d*F/tau_di;
    i_rel = alpha_rel*i_rel_factor*(Ca_rel-Ca_i);
    i_rel_f2 = F2/(F2+0.25{dimensionless});
    i_rel_factor = i_rel_f2*i_rel_f2;
    i_tr = (Ca_up-Ca_rel)*2.0{dimensionless}*Vol_rel*F/tau_tr;
    i_up = I_up_max*(Ca_i/k_cyca-k_xcs*k_xcs*Ca_up/k_srca)/((Ca_i+k_cyca)/k_cyca+k_xcs*(Ca_up+k_srca)/k_srca);
    ode(m, t) = (m_inf-m)/tau_m;
    m_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm+Na_m_Vhalf-(4.3{dimensionless}+5.0{dimensionless})/20.0{dimensionless}*(T-294.15{dimensionless}))/Na_m_hill));
    q10exp = (T-306.15{dimensionless})/10.0{dimensionless};
    ode(r, t) = (r_inf-r)/tau_r;
    r_Ca_d_factor = r_Ca_d_term*r_Ca_d_term*r_Ca_d_term*r_Ca_d_term;
    r_Ca_d_term = Ca_d/(Ca_d+k_rel_d);
    r_Ca_i_factor = r_Ca_i_term*r_Ca_i_term*r_Ca_i_term*r_Ca_i_term;
    r_Ca_i_term = Ca_i/(Ca_i+k_rel_i);
    r_act = 203.8{dimensionless}*(r_Ca_i_factor+r_Ca_d_factor);
    r_inact = 33.96{dimensionless}+339.6{dimensionless}*r_Ca_i_factor;
    r_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(Vm+rkv_mod)/11.0{dimensionless}));
    ode(rr, t) = (rr_infinity-rr)/tau_rr;
    rr_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm-1.0{dimensionless})/(-11.0{dimensionless})));
    ode(s, t) = (s_inf-s)/tau_s;
    s_factor = (Vm+52.45{dimensionless})/15.8827{dimensionless};
    s_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm+skv_mod)/7.0{dimensionless}));
    ode(ss, t) = (ss_infinity-ss)/tau_ss;
    ss_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((Vm+40.5{dimensionless})/11.5{dimensionless}));
    tau_d_L = 0.0027{dimensionless}*exp(-d_L_factor*d_L_factor)+0.002{dimensionless};
    tau_f_L1 = 0.161{dimensionless}*exp(-f_L_factor*f_L_factor/14.4{dimensionless}/14.4{dimensionless})+0.01{dimensionless};
    tau_f_L2 = 1.3323{dimensionless}*exp(-f_L_factor*f_L_factor/14.2{dimensionless}/14.2{dimensionless})+0.0626{dimensionless};
    tau_h1 = 1.0{dimensionless}/pow(q10tauNa, q10exp)*(0.03{dimensionless}/(1.0{dimensionless}+exp((Vm+35.1{dimensionless})/3.2{dimensionless}))+0.0003{dimensionless});
    tau_h2 = 1.0{dimensionless}/pow(q10tauNa, q10exp)*(0.12{dimensionless}/(1.0{dimensionless}+exp((Vm+35.1{dimensionless})/3.2{dimensionless}))+0.003{dimensionless});
    tau_m = 1.0{dimensionless}/pow(q10tauNa, q10exp)*(4.2e-05{dimensionless}*exp(-1.0{dimensionless}*sqr((Vm+25.57{dimensionless})/28.8{dimensionless}))+2.4e-05{dimensionless});
    tau_r = 0.0203{dimensionless}+0.138{dimensionless}*exp(-((Vm+20.0{dimensionless})/25.9{dimensionless})*((Vm+20.0{dimensionless})/25.9{dimensionless}));
    tau_rr = 0.0035{dimensionless}*exp(-Vm*Vm/30.0{dimensionless}/30.0{dimensionless})+0.0015{dimensionless};
    tau_s = 1.574{dimensionless}+5.268{dimensionless}*exp(-((Vm+23.0{dimensionless})/22.7{dimensionless})*((Vm+23.0{dimensionless})/22.7{dimensionless}));
    tau_ss = 0.025635{dimensionless}*exp(-s_factor*s_factor)+0.01414{dimensionless};
  enddef;

  def comp stimulus as
    var I_stim: dimensionless {interface: public};
    var pace: dimensionless {init: 0.0};
    var stimulus_amplitude: dimensionless;
    var t: dimensionless {interface: public};
    I_stim = pace*stimulus_amplitude;
    stimulus_amplitude = -80.0{dimensionless};
  enddef;
  def map between cell and stimulus for
    vars I_stim and I_stim;
    vars t and t;
  enddef;
enddef;
