def model Avezzu2025_HFVM_10gw as
  def unit d as
    unit dimensionless;
  enddef;
  def unit um3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit _ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit mV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit _mV as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit _mV_ms as
    unit mV {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit nS_pF as
    unit siemens {pref: nano};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit mA_pA as
    unit ampere {pref: milli};
    unit ampere {expo: -1, pref: pico};
  enddef;
  def unit pF as
    unit farad {pref: pico};
  enddef;
  def unit pA_pF as
    unit ampere {pref: pico};
    unit pF {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mM_ms as
    unit mM;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit _mM_ms as
    unit mM {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit _mM2_ms as
    unit mM {expo: -2};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit K as
    unit kelvin;
  enddef;
  def unit J_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit K {expo: -1};
  enddef;
  def unit C_mmol as
    unit coulomb;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit l_F_s as
    unit litre;
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;

  def comp environment as
    var t: ms {pub: out};
  enddef;

  def comp membrane as
    var V: mV {init: -82.31905038433626, pub: out};
    var R: J_mol_K {init: 8.314472, pub: out};
    var T: K {init: 310, pub: out};
    var F: C_mmol {init: 96.4853415, pub: out};
    var C_m: pF {init: 11.8234, pub: out};
    var V_c: um3 {init: 348.67734968, pub: out};
    var t: ms {pub: in};
    var I_Na: pA_pF {pub: in};
    var I_K1: pA_pF {pub: in};
    var I_Kr: pA_pF {pub: in};
    var I_Ks: pA_pF {pub: in};
    var I_CaL: pA_pF {pub: in};
    var I_CaT: pA_pF {pub: in};
    var I_NaCa: pA_pF {pub: in};
    var I_NaK: pA_pF {pub: in};
    var I_to: pA_pF {pub: in};
    var I_f: pA_pF {pub: in};
    var I_pK: pA_pF {pub: in};
    var I_pCa: pA_pF {pub: in};
    var I_bNa: pA_pF {pub: in};
    var I_bCa: pA_pF {pub: in};
    var I_stim: pA_pF {pub: out};
    var stim_s: ms {init: 10};
    var stim_p: ms {init: 353};
    var stim_d: ms {init: 1};
    var stim_a: pA_pF {init: 52};
    I_stim = sel
      case (t-floor(t/stim_p)*stim_p >= stim_s) and (t-floor(t/stim_p)*stim_p <= stim_s+stim_d):
        -stim_a;
      otherwise:
        0{pA_pF};
    endsel;
    ode(V, t) = -(I_K1+I_to+I_Kr+I_Ks+I_CaL+I_CaT+I_NaK+I_Na+I_bNa+I_NaCa+I_bCa+I_pK+I_pCa+I_f+I_stim);
  enddef;

  def comp reversal_potentials as
    var E_Na: mV {pub: out};
    var E_K: mV {pub: out};
    var E_Ks: mV {pub: out};
    var E_Ca: mV {pub: out};
    var P_KNa: d {init: 0.03};
    var K_e: mM {pub: in};
    var Na_e: mM {pub: in};
    var K_i: mM {pub: in};
    var Na_i: mM {pub: in};
    var Ca_e: mM {pub: in};
    var Ca_i: mM {pub: in};
    var R: J_mol_K {pub: in};
    var F: C_mmol {pub: in};
    var T: K {pub: in};
    var t: ms {pub: in};
    E_Na = R*T/F*ln(Na_e/Na_i);
    E_K = R*T/F*ln(K_e/K_i);
    E_Ks = R*T/F*ln((K_e+P_KNa*Na_e)/(K_i+P_KNa*Na_i));
    E_Ca = 0.5{d}*R*T/F*ln(Ca_e/Ca_i);
  enddef;

  def comp fast_sodium_current as
    var I_Na: pA_pF {pub: out};
    var g_Na: nS_pF {init: 7.62659444};
    var E_Na: mV {pub: in};
    var t: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var m: d {priv: in};
    var h: d {priv: in};
    var j: d {priv: in};
    I_Na = g_Na*pow(m, 3{d})*h*j*(V-E_Na);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: d {init: 0.003168041765753429, pub: out};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var m_inf: d;
    var alpha_m: d;
    var beta_m: d;
    var tau_m: ms;
    m_inf = 1{d}/sqr(1{d}+exp((-56.86{mV}-V)/9.03{mV}));
    alpha_m = 1{d}/(1{d}+exp((-60{mV}-V)/5{mV}));
    beta_m = 0.1{d}/(1{d}+exp((V+35{mV})/5{mV}))+0.1{d}/(1{d}+exp((V-50{mV})/200{mV}));
    tau_m = 1{ms}*alpha_m*beta_m;
    ode(m, t) = (m_inf-m)/tau_m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: d {init: 0.6632395003358482, pub: out};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var h_inf: d;
    var alpha_h: _ms;
    var beta_h: _ms;
    var tau_h: ms;
    h_inf = 1{d}/sqr(1{d}+exp((V+71.55{mV})/7.43{mV}));
    alpha_h = sel
      case V < -40{mV}:
        0.057{per_ms}*exp(-(V+80{mV})/6.8{mV});
      otherwise:
        0{per_ms};
    endsel;
    beta_h = sel
      case V < -40{mV}:
        2.7{_ms}*exp(0.079{_mV}*V)+310000{_ms}*exp(0.3485{_mV}*V);
      otherwise:
        0.77{_ms}/(0.13{d}*(1{d}+exp((V+10.66{mV})/(-11.1{mV}))));
    endsel;
    tau_h = 1{d}/(alpha_h+beta_h);
    ode(h, t) = (h_inf-h)/tau_h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var j: d {init: 0.5311135520174594, pub: out};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var j_inf: d;
    var alpha_j: _ms;
    var beta_j: _ms;
    var tau_j: ms;
    j_inf = 1{d}/sqr(1{d}+exp((V+71.55{mV})/7.43{mV}));
    alpha_j = sel
      case V < -40{mV}:
        (-25428{_ms}*exp(0.2444{d}*V)-6.948e-6{_ms}*exp(-0.04391{d}*V))*(V+37.78{mV})/(1{d}+exp(0.311{d}*(V+79.23{mV})));
      otherwise:
        0{_ms};
    endsel;
    beta_j = sel
      case V < -40{mV}:
        0.02424{_ms}*exp(-0.01052{_mV}*V)/(1{d}+exp(-0.1378{_mV}*(V+40.14{mV})));
      otherwise:
        0.6{_ms}*exp(0.057{_mV}*V)/(1{d}+exp(-0.1{_mV}*(V+32{mV})));
    endsel;
    tau_j = 1{d}/(alpha_j+beta_j);
    ode(j, t) = (j_inf-j)/tau_j;
  enddef;

  def comp inward_rectifier_potassium_current as
    var I_K1: pA_pF {pub: out};
    var g_K1: nS_pF {init: 2.78527566};
    // {init: 2.78527566}; //50% 1.3926//90% 0.2785 //20% 2.22822053
    var V: mV {pub: in};
    var K_e: mM {pub: in};
    var E_K: mV {pub: in};
    var t: ms {pub: in};
    var xK1_inf: d;
    var alpha_K1: d;
    var beta_K1: d;
    alpha_K1 = 0.1{d}/(1{d}+exp(0.06{_mV}*(V-E_K-200{mV})));
    beta_K1 = (3{d}*exp(0.0002{_mV}*(V-E_K+100{mV}))+exp(0.1{_mV}*(V-E_K-10{mV})))/(1{d}+exp(-0.5{_mV}*(V-E_K)));
    xK1_inf = alpha_K1/(alpha_K1+beta_K1);
    I_K1 = g_K1*xK1_inf*sqrt(K_e/5.4{mM})*(V-E_K);
  enddef;

  def comp rapid_time_dependent_potassium_current as
    var I_Kr: pA_pF {pub: out};
    var g_Kr: nS_pF {init: 0.151515865};
    var E_K: mV {pub: in};
    var K_e: mM {pub: in};
    var t: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var Xr1: d {priv: in};
    var Xr2: d {priv: in};
    I_Kr = g_Kr*sqrt(K_e/5.4{mM})*Xr1*Xr2*(V-E_K);
  enddef;

  def comp rapid_time_dependent_potassium_current_Xr1_gate as
    var Xr1: d {init: 0.07425181787778348, pub: out};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var xr1_inf: d;
    var alpha_xr1: d;
    var beta_xr1: d;
    var tau_xr1: ms;
    xr1_inf = 1{d}/(1{d}+exp((-26{mV}-V)/7{mV}));
    alpha_xr1 = 450{d}/(1{d}+exp((-45{mV}-V)/10{mV}));
    beta_xr1 = 6{d}/(1{d}+exp((V+30{mV})/11.5{mV}));
    tau_xr1 = 1{ms}*alpha_xr1*beta_xr1;
    ode(Xr1, t) = (xr1_inf-Xr1)/tau_xr1;
  enddef;

  def comp rapid_time_dependent_potassium_current_Xr2_gate as
    var Xr2: d {init: 0.4412585279437558, pub: out};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var xr2_inf: d;
    var alpha_xr2: d;
    var beta_xr2: d;
    var tau_xr2: ms;
    xr2_inf = 1{d}/(1{d}+exp((V+88{mV})/24{mV}));
    alpha_xr2 = 3{d}/(1{d}+exp((-60{mV}-V)/20{mV}));
    beta_xr2 = 1.12{d}/(1{d}+exp((V-60{mV})/20{mV}));
    tau_xr2 = 1{ms}*alpha_xr2*beta_xr2;
    ode(Xr2, t) = (xr2_inf-Xr2)/tau_xr2;
  enddef;

  def comp slow_time_dependent_potassium_current as
    var I_Ks: pA_pF {pub: out};
    var g_Ks: nS_pF {init: 0.375238231};
    var E_Ks: mV {pub: in};
    var t: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var Xs: d {priv: in};
    I_Ks = g_Ks*sqr(Xs)*(V-E_Ks);
  enddef;

  def comp slow_time_dependent_potassium_current_Xs_gate as
    var Xs: d {init: 0.021216229948985553, pub: out};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var xs_inf: d;
    var alpha_xs: d;
    var beta_xs: d;
    var tau_xs: ms;
    xs_inf = 1{d}/(1{d}+exp((-5{mV}-V)/14{mV}));
    alpha_xs = 1400{d}/sqrt(1{d}+exp((5{mV}-V)/6{mV}));
    beta_xs = 1{d}/(1{d}+exp((V-35{mV})/15{mV}));
    tau_xs = 1{ms}*alpha_xs*beta_xs+80{ms};
    ode(Xs, t) = (xs_inf-Xs)/tau_xs;
  enddef;

  def comp L_type_calcium_current as
    var I_CaL: pA_pF {pub: out};
    var g_CaL: l_F_s {init: 0.0108749362};
    // {init: 0.0108749362};//50% 0.00543747// 90% 0.00108749
    var Ca_e: mM {pub: in};
    var Ca_SS: mM {priv: out, pub: in};
    var R: J_mol_K {pub: in};
    var F: C_mmol {pub: in};
    var T: K {pub: in};
    var t: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var d: d {priv: in, pub: out};
    var f: d {priv: in};
    var f2: d {priv: in};
    var fCaSS: d {priv: in};
    I_CaL = g_CaL*d*f*f2*fCaSS*4{d}*(V-15{mV})*sqr(F)/(R*T)*(0.25{d}*Ca_SS*exp(2{d}*(V-15{mV})*F/(R*T))-Ca_e)/(exp(2{d}*(V-15{mV})*F/(R*T))-1{d});
  enddef;

  def comp L_type_calcium_current_d_gate as
    var d: d {init: 4.966231702796764e-5, pub: out};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var d_inf: d;
    var alpha_d: d;
    var beta_d: d;
    var gamma_d: ms;
    var tau_d: ms;
    d_inf = 1{d}/(1{d}+exp((-8{mV}-V)/7.5{mV}));
    alpha_d = 1.4{d}/(1{d}+exp((-35{mV}-V)/13{mV}))+0.25{d};
    beta_d = 1.4{d}/(1{d}+exp((V+5{mV})/5{mV}));
    gamma_d = 1{ms}/(1{d}+exp((50{mV}-V)/20{mV}));
    tau_d = 1{ms}*alpha_d*beta_d+gamma_d;
    ode(d, t) = (d_inf-d)/tau_d;
  enddef;

  def comp L_type_calcium_current_f_gate as
    var f: d {init: 0.6740117689220396, pub: out};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var f_inf: d;
    var tau_f: ms;
    f_inf = 1{d}/(1{d}+exp((V+20{mV})/7{mV}));
    tau_f = 1102.5{ms}*exp(-sqr(V+27{mV})/225{mV2})+200{ms}/(1{d}+exp((13{mV}-V)/10{mV}))+180{ms}/(1{d}+exp((V+30{mV})/10{mV}))+20{ms};
    ode(f, t) = (f_inf-f)/tau_f;
  enddef;

  def comp L_type_calcium_current_f2_gate as
    var f2: d {init: 0.9095881370387117, pub: out};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var f2_inf: d;
    var tau_f2: ms;
    f2_inf = 0.67{d}/(1{d}+exp((V+35{mV})/7{mV}))+0.33{d};
    tau_f2 = 562{ms}*exp(-sqr(V+27{mV})/240{mV2})+31{ms}/(1{d}+exp((25{mV}-V)/10{mV}))+80{ms}/(1{d}+exp((V+30{mV})/10{mV}));
    ode(f2, t) = (f2_inf-f2)/tau_f2;
  enddef;

  def comp L_type_calcium_current_fCaSS_gate as
    var fCaSS: d {init: 0.9867658763427091, pub: out};
    var Ca_SS: mM {pub: in};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var fCaSS_inf: d;
    var tau_fCaSS: ms;
    fCaSS_inf = 0.6{d}/(1{d}+sqr(Ca_SS/0.05{mM}))+0.4{d};
    tau_fCaSS = 80{ms}/(1{d}+sqr(Ca_SS/0.05{mM}))+2{ms};
    ode(fCaSS, t) = (fCaSS_inf-fCaSS)/tau_fCaSS;
  enddef;

  def comp T_type_calcium_current as
    var I_CaT: pA_pF {pub: out};
    var g_CaT: nS_pF {init: 1.587};
    // {init: 1.587}; //50% 0.7935//90% 0.1587
    var E_Ca: mV {pub: in};
    var t: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var d_T: d {priv: in};
    var f_T: d {priv: in};
    I_CaT = g_CaT*d_T*f_T*(V-E_Ca+75{mV});
  enddef;

  def comp T_type_calcium_current_d_gate as
    var d_T: d {init: 5.93224113564556e-5, pub: out};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var d_Tinf: d;
    var tau_d_T: ms;
    d_Tinf = 1{d}/(1{d}+exp((-23{mV}-V)/6.1{mV}));
    tau_d_T = 0.6{ms}+5.4{ms}/(1{d}+exp(0.03{_mV}*(V+100{mV})));
    ode(d_T, t) = (d_Tinf-d_T)/tau_d_T;
  enddef;

  def comp T_type_calcium_current_f_gate as
    var f_T: d {init: 0.7567010784040331, pub: out};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var f_Tinf: d;
    var tau_f_T: ms;
    f_Tinf = 1{d}/(1{d}+exp((V+75{mV})/6.6{mV}));
    tau_f_T = 1{ms}+40{ms}/(1{d}+exp(0.08{per_mV}*(V+65{mV})));
    ode(f_T, t) = (f_Tinf-f_T)/tau_f_T;
  enddef;

  def comp sodium_calcium_exchanger_current as
    var I_NaCa: pA_pF {pub: out};
    var k_NaCa: pA_pF {init: 681.377055};
    // {init: 681.377055}; //50% 1.0221e+03//90% 1.2946e+03
    var K_sat: d {init: 0.1};
    var alpha: d {init: 2.5};
    var gamma: d {init: 0.35};
    var Km_Ca: mM {init: 1.38};
    var Km_Nai: mM {init: 87.5};
    var Na_i: mM {pub: in};
    var Na_e: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_e: mM {pub: in};
    var R: J_mol_K {pub: in};
    var F: C_mmol {pub: in};
    var T: K {pub: in};
    var V: mV {pub: in};
    var t: ms {pub: in};
    I_NaCa = k_NaCa*(exp(gamma*V*F/(R*T))*pow(Na_i, 3{d})*Ca_e-exp((gamma-1{d})*V*F/(R*T))*pow(Na_e, 3{d})*Ca_i*alpha)/((pow(Km_Nai, 3{d})+pow(Na_e, 3{d}))*(Km_Ca+Ca_e)*(1{d}+K_sat*exp((gamma-1{d})*V*F/(R*T))));
  enddef;

  def comp sodium_potassium_pump_current as
    var I_NaK: pA_pF {pub: out};
    var p_NaK: pA_pF {init: 3.99757408};
    var K_mk: mM {init: 1};
    var K_mNa: mM {init: 40};
    var K_e: mM {pub: in};
    var Na_i: mM {pub: in};
    var t: ms {pub: in};
    var R: J_mol_K {pub: in};
    var F: C_mmol {pub: in};
    var T: K {pub: in};
    var V: mV {priv: out, pub: in};
    I_NaK = p_NaK*K_e/(K_e+K_mk)*Na_i/(Na_i+K_mNa)/(1{d}+0.1245{d}*exp(-0.1{d}*V*F/(R*T))+0.0353{d}*exp(-V*F/(R*T)));
  enddef;

  def comp transient_outward_current as
    var I_to: pA_pF {pub: out};
    var g_to: nS_pF {init: 0.0571858678};
    // {init: 0.0571858678}; //50% 0.08577880//90% 0.10865315
    var E_K: mV {pub: in};
    var V: mV {priv: out, pub: in};
    var t: ms {priv: out, pub: in};
    var s: d {priv: in};
    var r: d {priv: in};
    I_to = g_to*r*s*(V-E_K);
  enddef;

  def comp transient_outward_current_s_gate as
    var s: d {init: 0.999996217592982, pub: out};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var s_inf: d;
    var tau_s: ms;
    s_inf = 1{d}/(1{d}+exp((V+20{mV})/5{mV}));
    tau_s = 85{ms}*exp(-sqr(V+45{mV})/320{mV2})+5{ms}/(1{d}+exp((V-20{mV})/5{mV}))+3{ms};
    ode(s, t) = (s_inf-s)/tau_s;
  enddef;

  def comp transient_outward_current_r_gate as
    var r: d {init: 3.8729744057242666e-8, pub: out};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var r_inf: d;
    var tau_r: ms;
    r_inf = 1{d}/(1{d}+exp((20{mV}-V)/6{mV}));
    tau_r = 9.5{ms}*exp(-sqr(V+40{mV})/1800{mV2})+0.8{ms};
    ode(r, t) = (r_inf-r)/tau_r;
  enddef;

  def comp funny_current as
    var I_f: pA_pF {pub: out};
    var I_fNa: pA_pF {pub: out};
    var I_fK: pA_pF {pub: out};
    var g_fNa: nS_pF;
    var g_fK: nS_pF {init: 0.112571075};
    var E_Na: mV {pub: in};
    var E_K: mV {pub: in};
    var t: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var y: d {priv: in};
    g_fNa = 0.5949{d}*g_fK;
    I_fNa = g_fNa*y*(V-E_Na);
    I_fK = g_fK*y*(V-E_K);
    I_f = I_fNa+I_fK;
  enddef;

  def comp funny_current_y_gate as
    var y: d {init: 0.02706175213059363, pub: out};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var y_inf: d;
    var tau_y: ms;
    y_inf = sel
      case V < -80.0{mV}:
        0.01329{d}+0.99921{d}/(1.0{d}+exp((V+97.134{mV})/8.1752{mV}));
      otherwise:
        0.0002501{d}*exp(-V/12.861{mV});
    endsel;
    tau_y = 1.0{d}/(0.00036{_mV_ms}*(V+148.8{mV})/(exp(0.066{_mV}*(V+148.8{mV}))-1.0{d})+0.0001{_mV_ms}*(V+87.3{mV})/(1.0{d}-exp(-0.2{_mV}*(V+87.3{mV}))))-54{ms};
    ode(y, t) = (y_inf-y)/tau_y;
  enddef;

  def comp potassium_pump_current as
    var I_pK: pA_pF {pub: out};
    var g_pK: nS_pF {init: 0.00594863031};
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    I_pK = g_pK*(V-E_K)/(1{d}+exp((25{mV}-V)/5.98{mV}));
  enddef;

  def comp calcium_pump_current as
    var I_pCa: pA_pF {pub: out};
    var g_pCa: pA_pF {init: 0.136134551};
    var K_pCa: mM {init: 0.0005};
    var Ca_i: mM {pub: in};
    I_pCa = g_pCa*Ca_i/(Ca_i+K_pCa);
  enddef;

  def comp sodium_background_current as
    var I_bNa: pA_pF {pub: out};
    var g_bNa: nS_pF {init: 1.59826806e-04};
    var E_Na: mV {pub: in};
    var t: ms {pub: in};
    var V: mV {pub: in};
    I_bNa = g_bNa*(V-E_Na);
  enddef;

  def comp calcium_background_current as
    var I_bCa: pA_pF {pub: out};
    var g_bCa: nS_pF {init: 3.95871292e-04};
    var E_Ca: mV {pub: in};
    var t: ms {pub: in};
    var V: mV {pub: in};
    I_bCa = g_bCa*(V-E_Ca);
  enddef;

  def comp sodium_dynamics as
    var Na_i: mM {init: 4.765748992328347, pub: out};
    var Na_e: mM {init: 140, pub: out};
    var t: ms {pub: in};
    var F: C_mmol {pub: in};
    var C_m: pF {pub: in};
    var V_c: um3 {pub: in};
    var I_Na: pA_pF {pub: in};
    var I_fNa: pA_pF {pub: in};
    var I_NaCa: pA_pF {pub: in};
    var I_NaK: pA_pF {pub: in};
    var I_bNa: pA_pF {pub: in};
    ode(Na_i, t) = -(I_Na+I_fNa+I_bNa+3{d}*I_NaK+3{d}*I_NaCa)/(V_c*F)*C_m;
  enddef;

  def comp potassium_dynamics as
    var K_i: mM {init: 140.46186062237774, pub: out};
    var K_e: mM {init: 5.4, pub: out};
    var t: ms {pub: in};
    var F: C_mmol {pub: in};
    var C_m: pF {pub: in};
    var V_c: um3 {pub: in};
    var I_K1: pA_pF {pub: in};
    var I_to: pA_pF {pub: in};
    var I_NaK: pA_pF {pub: in};
    var I_Kr: pA_pF {pub: in};
    var I_Ks: pA_pF {pub: in};
    var I_fK: pA_pF {pub: in};
    var I_pK: pA_pF {pub: in};
    var I_stim: pA_pF {pub: in};
    ode(K_i, t) = -(I_K1+I_to+I_Kr+I_Ks+I_fK+I_pK+I_stim-2{d}*I_NaK)/(V_c*F)*C_m;
  enddef;

  def comp calcium_dynamics as
    var Ca_i: mM {init: 0.00011161967314543063, pub: out};
    var Ca_e: mM {init: 2, pub: out};
    var Ca_SR: mM {init: 11.071118801447446};
    var Ca_SS: mM {init: 0.0005689010815000564, pub: out};
    var I_rel: mM_ms;
    var I_up: mM_ms;
    var I_leak: mM_ms;
    var I_xfer: mM_ms;
    var O: d;
    var R_prime: d {init: 0.9265739700622043};
    var k1: _mM2_ms;
    var k2: _mM_ms;
    var k1_prime: _mM2_ms {init: 0.15};
    var k2_prime: _mM_ms {init: 0.045};
    var k3: _ms {init: 0.06};
    var k4: _ms {init: 0.005};
    var EC: mM {init: 1.5};
    var max_SR: d {init: 2.5};
    var min_SR: d {init: 1};
    var kcasr: d;
    var V_rel: _ms {init: 0.102};
    var V_xfer: _ms {init: 0.0038};
    var K_up: mM {init: 0.00025};
    var V_leak: _ms {init: 0.00036};
    var Vmax_up: mM_ms {init: 0.006375};
    var Ca_i_bufc: d;
    var Ca_SR_bufSR: d;
    var Ca_SS_bufSS: d;
    var Buf_c: mM {init: 0.2};
    var K_buf_c: mM {init: 0.001};
    var Buf_SR: mM {init: 10};
    var K_buf_SR: mM {init: 0.3};
    var Buf_SS: mM {init: 0.4};
    var K_buf_SS: mM {init: 0.00025};
    var V_SR: um3 {init: 6.16429416};
    var V_SS: um3 {init: 0.31211616};
    var V_c: um3 {pub: in};
    var V: mV {pub: in};
    var t: ms {pub: in};
    var d: d {pub: in};
    var F: C_mmol {pub: in};
    var C_m: pF {pub: in};
    var I_CaL: pA_pF {pub: in};
    var I_CaT: pA_pF {pub: in};
    var I_NaCa: pA_pF {pub: in};
    var I_pCa: pA_pF {pub: in};
    var I_bCa: pA_pF {pub: in};
    var a_TropC: d {init: 0.867772982};
    var a_CASQ: d {init: 0.542174268};
    var a_SERCA: d {init: 0.99412268};
    var a_RyR: d {init: 0.238735627};
    I_rel = a_RyR*V_rel*O*(Ca_SR-Ca_SS);
    I_up = a_SERCA*Vmax_up/(1{d}+sqr(K_up)/sqr(Ca_i));
    I_leak = a_RyR*V_leak*(Ca_SR-Ca_i);
    I_xfer = V_xfer*(Ca_SS-Ca_i);
    O = k1*sqr(Ca_SS)*R_prime/(k3+k1*sqr(Ca_SS));
    ode(R_prime, t) = -k2*Ca_SS*R_prime+k4*(1{d}-R_prime);
    k1 = k1_prime/kcasr;
    k2 = k2_prime*kcasr;
    kcasr = max_SR-(max_SR-min_SR)/(1{d}+sqr(EC/Ca_SR));
    Ca_i_bufc = 1{d}/(1{d}+a_TropC*Buf_c*K_buf_c/sqr(Ca_i+K_buf_c));
    Ca_SR_bufSR = 1{d}/(1{d}+a_CASQ*Buf_SR*K_buf_SR/sqr(Ca_SR+K_buf_SR));
    Ca_SS_bufSS = 1{d}/(1{d}+a_TropC*Buf_SS*K_buf_SS/sqr(Ca_SS+K_buf_SS));
    ode(Ca_i, t) = Ca_i_bufc*((I_leak-I_up)*V_SR/V_c+I_xfer-(I_bCa+I_pCa-2{d}*I_NaCa)*C_m/(2{d}*V_c*F));
    ode(Ca_SR, t) = Ca_SR_bufSR*(I_up-(I_rel+I_leak));
    ode(Ca_SS, t) = Ca_SS_bufSS*(-(I_CaL+I_CaT)*C_m/(2{d}*V_SS*F)+I_rel*V_SR/V_SS-I_xfer*V_c/V_SS);
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp L_type_calcium_current incl
        comp L_type_calcium_current_d_gate;
        comp L_type_calcium_current_f_gate;
        comp L_type_calcium_current_f2_gate;
        comp L_type_calcium_current_fCaSS_gate;
      endcomp;
      comp T_type_calcium_current incl
        comp T_type_calcium_current_d_gate;
        comp T_type_calcium_current_f_gate;
      endcomp;
      comp funny_current incl
        comp funny_current_y_gate;
      endcomp;
      comp inward_rectifier_potassium_current;
      comp rapid_time_dependent_potassium_current incl
        comp rapid_time_dependent_potassium_current_Xr1_gate;
        comp rapid_time_dependent_potassium_current_Xr2_gate;
      endcomp;
      comp slow_time_dependent_potassium_current incl
        comp slow_time_dependent_potassium_current_Xs_gate;
      endcomp;
      comp sodium_background_current;
      comp calcium_background_current;
      comp transient_outward_current incl
        comp transient_outward_current_s_gate;
        comp transient_outward_current_r_gate;
      endcomp;
      comp sodium_potassium_pump_current;
      comp sodium_calcium_exchanger_current;
      comp calcium_pump_current;
      comp potassium_pump_current;
      comp calcium_dynamics;
      comp sodium_dynamics;
      comp potassium_dynamics;
      comp reversal_potentials;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_calcium_current incl
      comp L_type_calcium_current_d_gate;
      comp L_type_calcium_current_f_gate;
      comp L_type_calcium_current_f2_gate;
      comp L_type_calcium_current_fCaSS_gate;
    endcomp;
    comp T_type_calcium_current incl
      comp T_type_calcium_current_d_gate;
      comp T_type_calcium_current_f_gate;
    endcomp;
    comp funny_current incl
      comp funny_current_y_gate;
    endcomp;
    comp rapid_time_dependent_potassium_current incl
      comp rapid_time_dependent_potassium_current_Xr1_gate;
      comp rapid_time_dependent_potassium_current_Xr2_gate;
    endcomp;
    comp slow_time_dependent_potassium_current incl
      comp slow_time_dependent_potassium_current_Xs_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_s_gate;
      comp transient_outward_current_r_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars t and t;
  enddef;
  def map between reversal_potentials and environment for
    vars t and t;
  enddef;
  def map between fast_sodium_current and environment for
    vars t and t;
  enddef;
  def map between L_type_calcium_current and environment for
    vars t and t;
  enddef;
  def map between T_type_calcium_current and environment for
    vars t and t;
  enddef;
  def map between funny_current and environment for
    vars t and t;
  enddef;
  def map between rapid_time_dependent_potassium_current and environment for
    vars t and t;
  enddef;
  def map between slow_time_dependent_potassium_current and environment for
    vars t and t;
  enddef;
  def map between inward_rectifier_potassium_current and environment for
    vars t and t;
  enddef;
  def map between sodium_background_current and environment for
    vars t and t;
  enddef;
  def map between calcium_background_current and environment for
    vars t and t;
  enddef;
  def map between transient_outward_current and environment for
    vars t and t;
  enddef;
  def map between sodium_potassium_pump_current and environment for
    vars t and t;
  enddef;
  def map between sodium_calcium_exchanger_current and environment for
    vars t and t;
  enddef;
  def map between calcium_dynamics and environment for
    vars t and t;
  enddef;
  def map between sodium_dynamics and environment for
    vars t and t;
  enddef;
  def map between potassium_dynamics and environment for
    vars t and t;
  enddef;
  def map between membrane and reversal_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars I_Na and I_Na;
  enddef;
  def map between membrane and L_type_calcium_current for
    vars V and V;
    vars I_CaL and I_CaL;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and T_type_calcium_current for
    vars V and V;
    vars I_CaT and I_CaT;
  enddef;
  def map between membrane and funny_current for
    vars V and V;
    vars I_f and I_f;
  enddef;
  def map between membrane and rapid_time_dependent_potassium_current for
    vars V and V;
    vars I_Kr and I_Kr;
  enddef;
  def map between membrane and slow_time_dependent_potassium_current for
    vars V and V;
    vars I_Ks and I_Ks;
  enddef;
  def map between membrane and transient_outward_current for
    vars V and V;
    vars I_to and I_to;
  enddef;
  def map between membrane and inward_rectifier_potassium_current for
    vars V and V;
    vars I_K1 and I_K1;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars I_bNa and I_bNa;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars I_bCa and I_bCa;
  enddef;
  def map between membrane and sodium_potassium_pump_current for
    vars V and V;
    vars I_NaK and I_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_calcium_exchanger_current for
    vars V and V;
    vars I_NaCa and I_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and calcium_pump_current for
    vars I_pCa and I_pCa;
  enddef;
  def map between membrane and potassium_pump_current for
    vars V and V;
    vars I_pK and I_pK;
  enddef;
  def map between membrane and calcium_dynamics for
    vars V and V;
    vars F and F;
    vars V_c and V_c;
    vars C_m and C_m;
  enddef;
  def map between membrane and sodium_dynamics for
    vars F and F;
    vars V_c and V_c;
    vars C_m and C_m;
  enddef;
  def map between membrane and potassium_dynamics for
    vars F and F;
    vars V_c and V_c;
    vars C_m and C_m;
    vars I_stim and I_stim;
  enddef;
  def map between reversal_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and T_type_calcium_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and funny_current for
    vars E_Na and E_Na;
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and inward_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and rapid_time_dependent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and transient_outward_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and potassium_pump_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and slow_time_dependent_potassium_current for
    vars E_Ks and E_Ks;
  enddef;
  def map between reversal_potentials and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and fast_sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and calcium_dynamics for
    vars Ca_e and Ca_e;
    vars Ca_i and Ca_i;
  enddef;
  def map between reversal_potentials and potassium_dynamics for
    vars K_e and K_e;
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and sodium_dynamics for
    vars Na_e and Na_e;
    vars Na_i and Na_i;
  enddef;
  def map between inward_rectifier_potassium_current and potassium_dynamics for
    vars I_K1 and I_K1;
    vars K_e and K_e;
  enddef;
  def map between rapid_time_dependent_potassium_current and potassium_dynamics for
    vars I_Kr and I_Kr;
    vars K_e and K_e;
  enddef;
  def map between slow_time_dependent_potassium_current and potassium_dynamics for
    vars I_Ks and I_Ks;
  enddef;
  def map between fast_sodium_current and sodium_dynamics for
    vars I_Na and I_Na;
  enddef;
  def map between sodium_background_current and sodium_dynamics for
    vars I_bNa and I_bNa;
  enddef;
  def map between L_type_calcium_current and calcium_dynamics for
    vars Ca_e and Ca_e;
    vars Ca_SS and Ca_SS;
    vars d and d;
    vars I_CaL and I_CaL;
  enddef;
  def map between T_type_calcium_current and calcium_dynamics for
    vars I_CaT and I_CaT;
  enddef;
  def map between funny_current and sodium_dynamics for
    vars I_fNa and I_fNa;
  enddef;
  def map between funny_current and potassium_dynamics for
    vars I_fK and I_fK;
  enddef;
  def map between calcium_pump_current and calcium_dynamics for
    vars Ca_i and Ca_i;
    vars I_pCa and I_pCa;
  enddef;
  def map between calcium_background_current and calcium_dynamics for
    vars I_bCa and I_bCa;
  enddef;
  def map between sodium_potassium_pump_current and potassium_dynamics for
    vars I_NaK and I_NaK;
    vars K_e and K_e;
  enddef;
  def map between sodium_potassium_pump_current and sodium_dynamics for
    vars I_NaK and I_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_calcium_exchanger_current and calcium_dynamics for
    vars I_NaCa and I_NaCa;
    vars Ca_i and Ca_i;
    vars Ca_e and Ca_e;
  enddef;
  def map between sodium_calcium_exchanger_current and sodium_dynamics for
    vars I_NaCa and I_NaCa;
    vars Na_i and Na_i;
    vars Na_e and Na_e;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr1_gate for
    vars Xr1 and Xr1;
    vars t and t;
    vars V and V;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr2_gate for
    vars Xr2 and Xr2;
    vars t and t;
    vars V and V;
  enddef;
  def map between slow_time_dependent_potassium_current and slow_time_dependent_potassium_current_Xs_gate for
    vars Xs and Xs;
    vars t and t;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars t and t;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars t and t;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars t and t;
    vars V and V;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_d_gate for
    vars d and d;
    vars t and t;
    vars V and V;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_f_gate for
    vars f and f;
    vars t and t;
    vars V and V;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_f2_gate for
    vars f2 and f2;
    vars t and t;
    vars V and V;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_fCaSS_gate for
    vars fCaSS and fCaSS;
    vars t and t;
    vars Ca_SS and Ca_SS;
    vars V and V;
  enddef;
  def map between T_type_calcium_current and T_type_calcium_current_d_gate for
    vars d_T and d_T;
    vars t and t;
    vars V and V;
  enddef;
  def map between T_type_calcium_current and T_type_calcium_current_f_gate for
    vars f_T and f_T;
    vars t and t;
    vars V and V;
  enddef;
  def map between funny_current and funny_current_y_gate for
    vars y and y;
    vars t and t;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
    vars t and t;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r and r;
    vars t and t;
    vars V and V;
  enddef;
  def map between transient_outward_current and potassium_dynamics for
    vars I_to and I_to;
  enddef;
  def map between potassium_pump_current and potassium_dynamics for
    vars I_pK and I_pK;
  enddef;
enddef;
