def model multi_compartment_acinus_model as
  def unit mole_per_litre as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit metre_cubed as
    unit metre {expo: 3};
  enddef;
  def unit m_cubed_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mole_per_second as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mole_per_m_cubed as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit per_pascal as
    unit pascal {expo: -1};
  enddef;
  def unit mol_per_L_Pa as
    unit mole;
    unit litre {expo: -1};
    unit pascal {expo: -1};
  enddef;
  def unit mol_per_Pa_s as
    unit mole;
    unit pascal {expo: -1};
    unit second {expo: -1};
  enddef;

  def comp Environment as
    var time: second {pub: out};
    var atm_pressure: pascal {init: 101325, pub: out};
    var water_vapor_pressure: pascal {init: 6300, pub: out};
    var P_atm_effective: pascal {pub: out};
    var intervention_time: second {init: 300, pub: out};
    var exercise_factor: dimensionless {init: 1.0, pub: out};
    var drug_factor: dimensionless {init: 1.0, pub: out};
    var bronchodilator_factor: dimensionless {init: 0.25, pub: out};
    P_atm_effective = atm_pressure-water_vapor_pressure;
  enddef;

  def comp breathing_waveform as
    var time: second {pub: in};
    var intervention_time: second {pub: in};
    var exercise_factor: dimensionless {pub: in};
    var tidal_volume: metre_cubed {init: 0.0004, pub: out};
    var breathing_frequency: hertz {pub: out};
    var breathing_frequency_base: hertz {init: 0.2, pub: out};
    var inhale_fraction: dimensionless {init: 0.4};
    var Q_vent_total: m_cubed_per_s {pub: out};
    var cycle_dur: second;
    var t_mod: second;
    var t_in: second;
    var t_ex: second;
    var One: dimensionless {init: 1.0};
    breathing_frequency = sel
      case (exercise_factor <> One) and (time >= intervention_time):
        breathing_frequency_base*exercise_factor;
      otherwise:
        breathing_frequency_base;
    endsel;
    cycle_dur = One/breathing_frequency;
    t_mod = time-cycle_dur*floor(time/cycle_dur);
    t_in = inhale_fraction*cycle_dur;
    t_ex = (One-inhale_fraction)*cycle_dur;
    // Inhalation
    // Exhalation phase
    Q_vent_total = sel
      case (breathing_frequency <= 0{hertz}) and (tidal_volume <= 0{metre_cubed}):
        0{m_cubed_per_s};
      case t_mod < t_in:
        pi*tidal_volume*breathing_frequency/inhale_fraction*sin(t_mod/t_in*pi);
      otherwise:
        -pi*tidal_volume*breathing_frequency/(One-inhale_fraction)*sin((t_mod-t_in)/t_ex*pi);
    endsel;
  enddef;

  def comp ventilation_distributor as
    var Q_vent_total: m_cubed_per_s {pub: in};
    var time: second {pub: in};
    var bronchodilator_factor: dimensionless {pub: in};
    var intervention_time: second {pub: in};
    var bronchodilator_effect: dimensionless;
    var f_obs_1: dimensionless {pub: out};
    var f_obs_2: dimensionless {pub: out};
    var f_obs_3: dimensionless {pub: out};
    var f_obs_4: dimensionless {pub: out};
    var f_obs_5: dimensionless {pub: out};
    var f_obs_1_base: dimensionless {init: 0.0, pub: out};
    var f_obs_2_base: dimensionless {init: 0.8, pub: out};
    var f_obs_3_base: dimensionless {init: 0.8, pub: out};
    var f_obs_4_base: dimensionless {init: 0.0, pub: out};
    var f_obs_5_base: dimensionless {init: 0.0, pub: out};
    bronchodilator_effect = sel
      case (bronchodilator_factor <> 1.0{dimensionless}) and (time >= intervention_time):
        bronchodilator_factor;
      otherwise:
        1.0{dimensionless};
    endsel;
    f_obs_1 = f_obs_1_base*bronchodilator_effect;
    f_obs_2 = f_obs_2_base*bronchodilator_effect;
    f_obs_3 = f_obs_3_base*bronchodilator_effect;
    f_obs_4 = f_obs_4_base*bronchodilator_effect;
    f_obs_5 = f_obs_5_base*bronchodilator_effect;
    var Q_A_1: m_cubed_per_s {pub: out};
    var Q_A_2: m_cubed_per_s {pub: out};
    var Q_A_3: m_cubed_per_s {pub: out};
    var Q_A_4: m_cubed_per_s {pub: out};
    var Q_A_5: m_cubed_per_s {pub: out};
    var V0_1: metre_cubed {init: 0.000124, pub: out};
    var V0_2: metre_cubed {init: 0.000124, pub: out};
    var V0_3: metre_cubed {init: 0.000124, pub: out};
    var V0_4: metre_cubed {init: 0.000124, pub: out};
    var V0_5: metre_cubed {init: 0.000124, pub: out};
    var C_in_O2: mole_per_m_cubed {init: 0.21, pub: out};
    var C_in_CO2: mole_per_m_cubed {init: 0.0004, pub: out};
    var sum_conductance: dimensionless;
    sum_conductance = 5{dimensionless}-f_obs_1-f_obs_2-f_obs_3-f_obs_4-f_obs_5;
    Q_A_1 = Q_vent_total*(1{dimensionless}-f_obs_1)/sum_conductance;
    Q_A_2 = Q_vent_total*(1{dimensionless}-f_obs_2)/sum_conductance;
    Q_A_3 = Q_vent_total*(1{dimensionless}-f_obs_3)/sum_conductance;
    Q_A_4 = Q_vent_total*(1{dimensionless}-f_obs_4)/sum_conductance;
    Q_A_5 = Q_vent_total*(1{dimensionless}-f_obs_5)/sum_conductance;
  enddef;

  def comp perfusion_distributor as
    var Q_blood_total: m_cubed_per_s {pub: in};
    var P50: pascal {init: 2666};
    var n_hpv: dimensionless {init: 2.0};
    var intervention_time: second {pub: in};
    var drug_factor: dimensionless {pub: in};
    var time: second {pub: in};
    var drug_effect: dimensionless;
    var k_ex_O2_1: mol_per_Pa_s {pub: out};
    var k_ex_CO2_1: mol_per_Pa_s {pub: out};
    var k_ex_O2_2: mol_per_Pa_s {pub: out};
    var k_ex_CO2_2: mol_per_Pa_s {pub: out};
    var k_ex_O2_3: mol_per_Pa_s {pub: out};
    var k_ex_CO2_3: mol_per_Pa_s {pub: out};
    var k_ex_O2_4: mol_per_Pa_s {pub: out};
    var k_ex_CO2_4: mol_per_Pa_s {pub: out};
    var k_ex_O2_5: mol_per_Pa_s {pub: out};
    var k_ex_CO2_5: mol_per_Pa_s {pub: out};
    var k_ex_O2_1_base: mol_per_Pa_s {init: 3e-10, pub: out};
    var k_ex_CO2_1_base: mol_per_Pa_s {init: 5e-9, pub: out};
    var k_ex_O2_2_base: mol_per_Pa_s {init: 3e-10, pub: out};
    var k_ex_CO2_2_base: mol_per_Pa_s {init: 5e-9, pub: out};
    var k_ex_O2_3_base: mol_per_Pa_s {init: 3e-10, pub: out};
    var k_ex_CO2_3_base: mol_per_Pa_s {init: 5e-9, pub: out};
    var k_ex_O2_4_base: mol_per_Pa_s {init: 3e-10, pub: out};
    var k_ex_CO2_4_base: mol_per_Pa_s {init: 5e-9, pub: out};
    var k_ex_O2_5_base: mol_per_Pa_s {init: 3e-10, pub: out};
    var k_ex_CO2_5_base: mol_per_Pa_s {init: 5e-9, pub: out};
    drug_effect = sel
      case (drug_factor <> 1.0{dimensionless}) and (time >= intervention_time):
        drug_factor;
      otherwise:
        1.0{dimensionless};
    endsel;
    k_ex_O2_1 = drug_effect*k_ex_O2_1_base;
    k_ex_CO2_1 = drug_effect*k_ex_CO2_1_base;
    k_ex_O2_2 = drug_effect*k_ex_O2_2_base;
    k_ex_CO2_2 = drug_effect*k_ex_CO2_2_base;
    k_ex_O2_3 = drug_effect*k_ex_O2_3_base;
    k_ex_CO2_3 = drug_effect*k_ex_CO2_3_base;
    k_ex_O2_4 = drug_effect*k_ex_O2_4_base;
    k_ex_CO2_4 = drug_effect*k_ex_CO2_4_base;
    k_ex_O2_5 = drug_effect*k_ex_O2_5_base;
    k_ex_CO2_5 = drug_effect*k_ex_CO2_5_base;
    var P_A_O2_1: pascal {pub: in};
    var P_A_O2_2: pascal {pub: in};
    var P_A_O2_3: pascal {pub: in};
    var P_A_O2_4: pascal {pub: in};
    var P_A_O2_5: pascal {pub: in};
    var Q_b_1: m_cubed_per_s {pub: out};
    var Q_b_2: m_cubed_per_s {pub: out};
    var Q_b_3: m_cubed_per_s {pub: out};
    var Q_b_4: m_cubed_per_s {pub: out};
    var Q_b_5: m_cubed_per_s {pub: out};
    var w1: dimensionless;
    var w2: dimensionless;
    var w3: dimensionless;
    var w4: dimensionless;
    var w5: dimensionless;
    var w_sum: dimensionless;
    var One: dimensionless {init: 1.0};
    var theta: dimensionless {init: 1e-6};
    w1 = One/(One+pow(P50/max(theta, P_A_O2_1), n_hpv));
    w2 = One/(One+pow(P50/max(theta, P_A_O2_2), n_hpv));
    w3 = One/(One+pow(P50/max(theta, P_A_O2_3), n_hpv));
    w4 = One/(One+pow(P50/max(theta, P_A_O2_4), n_hpv));
    w5 = One/(One+pow(P50/max(theta, P_A_O2_5), n_hpv));
    w_sum = w1+w2+w3+w4+w5;
    Q_b_1 = Q_blood_total*w1/w_sum;
    Q_b_2 = Q_blood_total*w2/w_sum;
    Q_b_3 = Q_blood_total*w3/w_sum;
    Q_b_4 = Q_blood_total*w4/w_sum;
    Q_b_5 = Q_blood_total*w5/w_sum;
  enddef;

  def comp pulmonary_blood_pool as
    var time: second {pub: in};
    var V_b_pulm: litre {init: 0.05, pub: out};
    var Q_blood_total: m_cubed_per_s {pub: out};
    var Q_blood_total_base: m_cubed_per_s {init: 8.3e-5, pub: out};
    var intervention_time: second {pub: in};
    var exercise_factor: dimensionless {pub: in};
    var P_atm_effective: pascal {pub: in};
    var C_sys_O2: mole_per_litre {pub: in};
    var C_sys_CO2: mole_per_litre {pub: in};
    var I_ex_O2_1: mole_per_second {pub: in};
    var I_ex_O2_2: mole_per_second {pub: in};
    var I_ex_O2_3: mole_per_second {pub: in};
    var I_ex_O2_4: mole_per_second {pub: in};
    var I_ex_O2_5: mole_per_second {pub: in};
    var I_ex_CO2_1: mole_per_second {pub: in};
    var I_ex_CO2_2: mole_per_second {pub: in};
    var I_ex_CO2_3: mole_per_second {pub: in};
    var I_ex_CO2_4: mole_per_second {pub: in};
    var I_ex_CO2_5: mole_per_second {pub: in};
    var P50: pascal {init: 2666};
    var n_hill: dimensionless {init: 2.7};
    var H_cap: mole_per_litre {init: 0.0089};
    var alpha_O2: mol_per_L_Pa {init: 1.39e-6};
    var alpha_CO2: mol_per_L_Pa {init: 3.07e-5};
    var C_b_O2: mole_per_litre {pub: in};
    // init: 0.0065,
    var C_b_CO2: mole_per_litre {pub: in};
    // init: 0.021,
    var P_b_O2: pascal {pub: out};
    var P_b_CO2: pascal {pub: out};
    var I_ex_O2_total: mole_per_second;
    var I_ex_CO2_total: mole_per_second;
    var I_blood_O2: mole_per_second;
    var I_blood_CO2: mole_per_second;
    var dS_dp: per_pascal;
    var cap_factor_O2: litre;
    var cap_factor_CO2: litre;
    var L_per_m_cubed: dimensionless {init: 1000};
    Q_blood_total = sel
      case (exercise_factor <> 1.0{dimensionless}) and (time >= intervention_time):
        exercise_factor*Q_blood_total_base;
      otherwise:
        Q_blood_total_base;
    endsel;
    I_ex_O2_total = I_ex_O2_1+I_ex_O2_2+I_ex_O2_3+I_ex_O2_4+I_ex_O2_5;
    I_ex_CO2_total = I_ex_CO2_1+I_ex_CO2_2+I_ex_CO2_3+I_ex_CO2_4+I_ex_CO2_5;
    P_b_O2 = (C_b_O2-H_cap*pow(P_b_O2, n_hill)/(pow(P50, n_hill)+pow(P_b_O2, n_hill)))/alpha_O2;
    P_b_CO2 = C_b_CO2/alpha_CO2;
    dS_dp = n_hill*pow(P_b_O2, n_hill-1{dimensionless})*pow(P50, n_hill)/sqr(pow(P50, n_hill)+pow(P_b_O2, n_hill));
    cap_factor_O2 = V_b_pulm*(alpha_O2+H_cap*dS_dp);
    cap_factor_CO2 = V_b_pulm*alpha_CO2;
    I_blood_O2 = Q_blood_total*L_per_m_cubed*(C_sys_O2-C_b_O2);
    I_blood_CO2 = Q_blood_total*L_per_m_cubed*(C_sys_CO2-C_b_CO2);
    ode(C_b_O2, time) = (I_ex_O2_total+I_blood_O2)/cap_factor_O2;
    ode(C_b_CO2, time) = (-I_ex_CO2_total+I_blood_CO2)/cap_factor_CO2;
  enddef;

  def comp systemic_circulation as
    var time: second {pub: in};
    var tau_sys: second {init: 60.0, pub: out};
    var C_b_O2_init: mole_per_litre {init: 0.0087, pub: out};
    var C_b_CO2_init: mole_per_litre {init: 0.0214, pub: out};
    var C_s_O2: mole_per_litre {init: 0.0065, pub: out};
    var C_s_CO2: mole_per_litre {init: 0.022, pub: out};
    ode(C_s_O2, time) = (C_b_O2_init-C_s_O2)/tau_sys;
    ode(C_s_CO2, time) = (C_b_CO2_init-C_s_CO2)/tau_sys;
  enddef;

  def comp acinus_compartment_1 as
    var time: second {pub: in};
    var f_obs: dimensionless {pub: in};
    var k_ex_O2: mol_per_Pa_s {pub: in};
    var k_ex_CO2: mol_per_Pa_s {pub: in};
    var V0: metre_cubed {pub: in};
    var C_in_O2: mole_per_m_cubed {pub: in};
    var C_in_CO2: mole_per_m_cubed {pub: in};
    var P_atm_effective: pascal {pub: in};
    var Q_blood_total: m_cubed_per_s {pub: in};
    var Q_A: m_cubed_per_s {pub: in};
    var Q_b: m_cubed_per_s {pub: in};
    var P_b_O2: pascal {pub: in};
    var P_b_CO2: pascal {pub: in};
    var V_A: metre_cubed {init: 5.0e-5, pub: out};
    var n_O2: mole {init: 1.0e-6, pub: out};
    var n_CO2: mole {init: 1.0e-7, pub: out};
    var P_A_O2: pascal {pub: out};
    var I_ex_O2: mole_per_second {pub: out};
    var I_ex_CO2: mole_per_second {pub: out};
    var C_A_O2: mole_per_m_cubed;
    var C_A_CO2: mole_per_m_cubed;
    var P_A_CO2: pascal;
    var G_O2: mol_per_Pa_s;
    var G_CO2: mol_per_Pa_s;
    var I_vent_O2: mole_per_second;
    var I_vent_CO2: mole_per_second;
    var dV_A_dt: m_cubed_per_s;
    C_A_O2 = n_O2/V_A;
    C_A_CO2 = n_CO2/V_A;
    P_A_O2 = C_A_O2*P_atm_effective;
    P_A_CO2 = C_A_CO2*P_atm_effective;
    G_O2 = k_ex_O2*(1{dimensionless}-f_obs)*V_A*Q_b/Q_blood_total;
    G_CO2 = k_ex_CO2*(1{dimensionless}-f_obs)*V_A*Q_b/Q_blood_total;
    I_ex_O2 = G_O2*(P_A_O2-P_b_O2);
    I_ex_CO2 = G_CO2*(P_b_CO2-P_A_CO2);
    I_vent_O2 = sel
      case Q_A >= 0{m_cubed_per_s}:
        Q_A*C_in_O2;
      otherwise:
        Q_A*C_A_O2;
    endsel;
    I_vent_CO2 = sel
      case Q_A >= 0{m_cubed_per_s}:
        Q_A*C_in_CO2;
      otherwise:
        Q_A*C_A_CO2;
    endsel;
    dV_A_dt = sel
      case (V_A <= V0) and (Q_A < 0{m_cubed_per_s}):
        0{m_cubed_per_s};
      otherwise:
        Q_A;
    endsel;
    ode(V_A, time) = dV_A_dt;
    ode(n_O2, time) = I_vent_O2-I_ex_O2;
    ode(n_CO2, time) = I_vent_CO2+I_ex_CO2;
  enddef;

  def comp acinus_compartment_2 as
    var time: second {pub: in};
    var f_obs: dimensionless {pub: in};
    var k_ex_O2: mol_per_Pa_s {pub: in};
    var k_ex_CO2: mol_per_Pa_s {pub: in};
    var V0: metre_cubed {pub: in};
    var C_in_O2: mole_per_m_cubed {pub: in};
    var C_in_CO2: mole_per_m_cubed {pub: in};
    var P_atm_effective: pascal {pub: in};
    var Q_blood_total: m_cubed_per_s {pub: in};
    var Q_A: m_cubed_per_s {pub: in};
    var Q_b: m_cubed_per_s {pub: in};
    var P_b_O2: pascal {pub: in};
    var P_b_CO2: pascal {pub: in};
    var V_A: metre_cubed {init: 5.0e-5, pub: out};
    var n_O2: mole {init: 1.0e-6, pub: out};
    var n_CO2: mole {init: 1.0e-7, pub: out};
    var P_A_O2: pascal {pub: out};
    var I_ex_O2: mole_per_second {pub: out};
    var I_ex_CO2: mole_per_second {pub: out};
    var C_A_O2: mole_per_m_cubed;
    var C_A_CO2: mole_per_m_cubed;
    var P_A_CO2: pascal;
    var G_O2: mol_per_Pa_s;
    var G_CO2: mol_per_Pa_s;
    var I_vent_O2: mole_per_second;
    var I_vent_CO2: mole_per_second;
    var dV_A_dt: m_cubed_per_s;
    C_A_O2 = n_O2/V_A;
    C_A_CO2 = n_CO2/V_A;
    P_A_O2 = C_A_O2*P_atm_effective;
    P_A_CO2 = C_A_CO2*P_atm_effective;
    G_O2 = k_ex_O2*(1{dimensionless}-f_obs)*V_A*Q_b/Q_blood_total;
    G_CO2 = k_ex_CO2*(1{dimensionless}-f_obs)*V_A*Q_b/Q_blood_total;
    I_ex_O2 = G_O2*(P_A_O2-P_b_O2);
    I_ex_CO2 = G_CO2*(P_b_CO2-P_A_CO2);
    I_vent_O2 = sel
      case Q_A >= 0{m_cubed_per_s}:
        Q_A*C_in_O2;
      otherwise:
        Q_A*C_A_O2;
    endsel;
    I_vent_CO2 = sel
      case Q_A >= 0{m_cubed_per_s}:
        Q_A*C_in_CO2;
      otherwise:
        Q_A*C_A_CO2;
    endsel;
    dV_A_dt = sel
      case (V_A <= V0) and (Q_A < 0{m_cubed_per_s}):
        0{m_cubed_per_s};
      otherwise:
        Q_A;
    endsel;
    ode(V_A, time) = dV_A_dt;
    ode(n_O2, time) = I_vent_O2-I_ex_O2;
    ode(n_CO2, time) = I_vent_CO2+I_ex_CO2;
  enddef;

  def comp acinus_compartment_3 as
    var time: second {pub: in};
    var f_obs: dimensionless {pub: in};
    var k_ex_O2: mol_per_Pa_s {pub: in};
    var k_ex_CO2: mol_per_Pa_s {pub: in};
    var V0: metre_cubed {pub: in};
    var C_in_O2: mole_per_m_cubed {pub: in};
    var C_in_CO2: mole_per_m_cubed {pub: in};
    var P_atm_effective: pascal {pub: in};
    var Q_blood_total: m_cubed_per_s {pub: in};
    var Q_A: m_cubed_per_s {pub: in};
    var Q_b: m_cubed_per_s {pub: in};
    var P_b_O2: pascal {pub: in};
    var P_b_CO2: pascal {pub: in};
    var V_A: metre_cubed {init: 5.0e-5, pub: out};
    var n_O2: mole {init: 1.0e-6, pub: out};
    var n_CO2: mole {init: 1.0e-7, pub: out};
    var P_A_O2: pascal {pub: out};
    var I_ex_O2: mole_per_second {pub: out};
    var I_ex_CO2: mole_per_second {pub: out};
    var C_A_O2: mole_per_m_cubed;
    var C_A_CO2: mole_per_m_cubed;
    var P_A_CO2: pascal;
    var G_O2: mol_per_Pa_s;
    var G_CO2: mol_per_Pa_s;
    var I_vent_O2: mole_per_second;
    var I_vent_CO2: mole_per_second;
    var dV_A_dt: m_cubed_per_s;
    C_A_O2 = n_O2/V_A;
    C_A_CO2 = n_CO2/V_A;
    P_A_O2 = C_A_O2*P_atm_effective;
    P_A_CO2 = C_A_CO2*P_atm_effective;
    G_O2 = k_ex_O2*(1{dimensionless}-f_obs)*V_A*Q_b/Q_blood_total;
    G_CO2 = k_ex_CO2*(1{dimensionless}-f_obs)*V_A*Q_b/Q_blood_total;
    I_ex_O2 = G_O2*(P_A_O2-P_b_O2);
    I_ex_CO2 = G_CO2*(P_b_CO2-P_A_CO2);
    I_vent_O2 = sel
      case Q_A >= 0{m_cubed_per_s}:
        Q_A*C_in_O2;
      otherwise:
        Q_A*C_A_O2;
    endsel;
    I_vent_CO2 = sel
      case Q_A >= 0{m_cubed_per_s}:
        Q_A*C_in_CO2;
      otherwise:
        Q_A*C_A_CO2;
    endsel;
    dV_A_dt = sel
      case (V_A <= V0) and (Q_A < 0{m_cubed_per_s}):
        0{m_cubed_per_s};
      otherwise:
        Q_A;
    endsel;
    ode(V_A, time) = dV_A_dt;
    ode(n_O2, time) = I_vent_O2-I_ex_O2;
    ode(n_CO2, time) = I_vent_CO2+I_ex_CO2;
  enddef;

  def comp acinus_compartment_4 as
    var time: second {pub: in};
    var f_obs: dimensionless {pub: in};
    var k_ex_O2: mol_per_Pa_s {pub: in};
    var k_ex_CO2: mol_per_Pa_s {pub: in};
    var V0: metre_cubed {pub: in};
    var C_in_O2: mole_per_m_cubed {pub: in};
    var C_in_CO2: mole_per_m_cubed {pub: in};
    var P_atm_effective: pascal {pub: in};
    var Q_blood_total: m_cubed_per_s {pub: in};
    var Q_A: m_cubed_per_s {pub: in};
    var Q_b: m_cubed_per_s {pub: in};
    var P_b_O2: pascal {pub: in};
    var P_b_CO2: pascal {pub: in};
    var V_A: metre_cubed {init: 5.0e-5, pub: out};
    var n_O2: mole {init: 1.0e-6, pub: out};
    var n_CO2: mole {init: 1.0e-7, pub: out};
    var P_A_O2: pascal {pub: out};
    var I_ex_O2: mole_per_second {pub: out};
    var I_ex_CO2: mole_per_second {pub: out};
    var C_A_O2: mole_per_m_cubed;
    var C_A_CO2: mole_per_m_cubed;
    var P_A_CO2: pascal;
    var G_O2: mol_per_Pa_s;
    var G_CO2: mol_per_Pa_s;
    var I_vent_O2: mole_per_second;
    var I_vent_CO2: mole_per_second;
    var dV_A_dt: m_cubed_per_s;
    C_A_O2 = n_O2/V_A;
    C_A_CO2 = n_CO2/V_A;
    P_A_O2 = C_A_O2*P_atm_effective;
    P_A_CO2 = C_A_CO2*P_atm_effective;
    G_O2 = k_ex_O2*(1{dimensionless}-f_obs)*V_A*Q_b/Q_blood_total;
    G_CO2 = k_ex_CO2*(1{dimensionless}-f_obs)*V_A*Q_b/Q_blood_total;
    I_ex_O2 = G_O2*(P_A_O2-P_b_O2);
    I_ex_CO2 = G_CO2*(P_b_CO2-P_A_CO2);
    I_vent_O2 = sel
      case Q_A >= 0{m_cubed_per_s}:
        Q_A*C_in_O2;
      otherwise:
        Q_A*C_A_O2;
    endsel;
    I_vent_CO2 = sel
      case Q_A >= 0{m_cubed_per_s}:
        Q_A*C_in_CO2;
      otherwise:
        Q_A*C_A_CO2;
    endsel;
    dV_A_dt = sel
      case (V_A <= V0) and (Q_A < 0{m_cubed_per_s}):
        0{m_cubed_per_s};
      otherwise:
        Q_A;
    endsel;
    ode(V_A, time) = dV_A_dt;
    ode(n_O2, time) = I_vent_O2-I_ex_O2;
    ode(n_CO2, time) = I_vent_CO2+I_ex_CO2;
  enddef;

  def comp acinus_compartment_5 as
    var time: second {pub: in};
    var f_obs: dimensionless {pub: in};
    var k_ex_O2: mol_per_Pa_s {pub: in};
    var k_ex_CO2: mol_per_Pa_s {pub: in};
    var V0: metre_cubed {pub: in};
    var C_in_O2: mole_per_m_cubed {pub: in};
    var C_in_CO2: mole_per_m_cubed {pub: in};
    var P_atm_effective: pascal {pub: in};
    var Q_blood_total: m_cubed_per_s {pub: in};
    var Q_A: m_cubed_per_s {pub: in};
    var Q_b: m_cubed_per_s {pub: in};
    var P_b_O2: pascal {pub: in};
    var P_b_CO2: pascal {pub: in};
    var V_A: metre_cubed {init: 5.0e-5, pub: out};
    var n_O2: mole {init: 1.0e-6, pub: out};
    var n_CO2: mole {init: 1.0e-7, pub: out};
    var P_A_O2: pascal {pub: out};
    var I_ex_O2: mole_per_second {pub: out};
    var I_ex_CO2: mole_per_second {pub: out};
    var C_A_O2: mole_per_m_cubed;
    var C_A_CO2: mole_per_m_cubed;
    var P_A_CO2: pascal;
    var G_O2: mol_per_Pa_s;
    var G_CO2: mol_per_Pa_s;
    var I_vent_O2: mole_per_second;
    var I_vent_CO2: mole_per_second;
    var dV_A_dt: m_cubed_per_s;
    C_A_O2 = n_O2/V_A;
    C_A_CO2 = n_CO2/V_A;
    P_A_O2 = C_A_O2*P_atm_effective;
    P_A_CO2 = C_A_CO2*P_atm_effective;
    G_O2 = k_ex_O2*(1{m_cubed_per_s}-f_obs)*V_A*Q_b/Q_blood_total;
    G_CO2 = k_ex_CO2*(1{m_cubed_per_s}-f_obs)*V_A*Q_b/Q_blood_total;
    I_ex_O2 = G_O2*(P_A_O2-P_b_O2);
    I_ex_CO2 = G_CO2*(P_b_CO2-P_A_CO2);
    I_vent_O2 = sel
      case Q_A >= 0{m_cubed_per_s}:
        Q_A*C_in_O2;
      otherwise:
        Q_A*C_A_O2;
    endsel;
    I_vent_CO2 = sel
      case Q_A >= 0{m_cubed_per_s}:
        Q_A*C_in_CO2;
      otherwise:
        Q_A*C_A_CO2;
    endsel;
    dV_A_dt = sel
      case (V_A <= V0) and (Q_A < 0{m_cubed_per_s}):
        0{m_cubed_per_s};
      otherwise:
        Q_A;
    endsel;
    ode(V_A, time) = dV_A_dt;
    ode(n_O2, time) = I_vent_O2-I_ex_O2;
    ode(n_CO2, time) = I_vent_CO2+I_ex_CO2;
  enddef;

  def group as containment for
    comp Environment incl
      comp breathing_waveform;
      comp ventilation_distributor;
      comp perfusion_distributor;
      comp pulmonary_blood_pool;
      comp systemic_circulation;
      comp acinus_compartment_1;
      comp acinus_compartment_2;
      comp acinus_compartment_3;
      comp acinus_compartment_4;
      comp acinus_compartment_5;
    endcomp;
  enddef;
  def map between Environment and breathing_waveform for
    vars time and time;
    vars intervention_time and intervention_time;
    vars exercise_factor and exercise_factor;
  enddef;
  def map between Environment and pulmonary_blood_pool for
    vars time and time;
    vars P_atm_effective and P_atm_effective;
    vars intervention_time and intervention_time;
    vars exercise_factor and exercise_factor;
  enddef;
  def map between Environment and systemic_circulation for
    vars time and time;
  enddef;
  def map between Environment and perfusion_distributor for
    vars intervention_time and intervention_time;
    vars drug_factor and drug_factor;
    vars time and time;
  enddef;
  def map between Environment and ventilation_distributor for
    vars intervention_time and intervention_time;
    vars bronchodilator_factor and bronchodilator_factor;
    vars time and time;
  enddef;
  def map between breathing_waveform and ventilation_distributor for
    vars Q_vent_total and Q_vent_total;
  enddef;
  def map between Environment and acinus_compartment_1 for
    vars time and time;
    vars P_atm_effective and P_atm_effective;
  enddef;
  def map between Environment and acinus_compartment_2 for
    vars time and time;
    vars P_atm_effective and P_atm_effective;
  enddef;
  def map between Environment and acinus_compartment_3 for
    vars time and time;
    vars P_atm_effective and P_atm_effective;
  enddef;
  def map between Environment and acinus_compartment_4 for
    vars time and time;
    vars P_atm_effective and P_atm_effective;
  enddef;
  def map between Environment and acinus_compartment_5 for
    vars time and time;
    vars P_atm_effective and P_atm_effective;
  enddef;
  def map between ventilation_distributor and acinus_compartment_1 for
    vars Q_A_1 and Q_A;
    vars V0_1 and V0;
    vars f_obs_1 and f_obs;
    vars C_in_O2 and C_in_O2;
    vars C_in_CO2 and C_in_CO2;
  enddef;
  def map between ventilation_distributor and acinus_compartment_2 for
    vars Q_A_2 and Q_A;
    vars V0_2 and V0;
    vars f_obs_2 and f_obs;
    vars C_in_O2 and C_in_O2;
    vars C_in_CO2 and C_in_CO2;
  enddef;
  def map between ventilation_distributor and acinus_compartment_3 for
    vars Q_A_3 and Q_A;
    vars V0_3 and V0;
    vars f_obs_3 and f_obs;
    vars C_in_O2 and C_in_O2;
    vars C_in_CO2 and C_in_CO2;
  enddef;
  def map between ventilation_distributor and acinus_compartment_4 for
    vars Q_A_4 and Q_A;
    vars V0_4 and V0;
    vars f_obs_4 and f_obs;
    vars C_in_O2 and C_in_O2;
    vars C_in_CO2 and C_in_CO2;
  enddef;
  def map between ventilation_distributor and acinus_compartment_5 for
    vars Q_A_5 and Q_A;
    vars V0_5 and V0;
    vars f_obs_5 and f_obs;
    vars C_in_O2 and C_in_O2;
    vars C_in_CO2 and C_in_CO2;
  enddef;
  def map between perfusion_distributor and acinus_compartment_1 for
    vars Q_b_1 and Q_b;
    vars k_ex_O2_1 and k_ex_O2;
    vars k_ex_CO2_1 and k_ex_CO2;
  enddef;
  def map between perfusion_distributor and acinus_compartment_2 for
    vars Q_b_2 and Q_b;
    vars k_ex_O2_2 and k_ex_O2;
    vars k_ex_CO2_2 and k_ex_CO2;
  enddef;
  def map between perfusion_distributor and acinus_compartment_3 for
    vars Q_b_3 and Q_b;
    vars k_ex_O2_3 and k_ex_O2;
    vars k_ex_CO2_3 and k_ex_CO2;
  enddef;
  def map between perfusion_distributor and acinus_compartment_4 for
    vars Q_b_4 and Q_b;
    vars k_ex_O2_4 and k_ex_O2;
    vars k_ex_CO2_4 and k_ex_CO2;
  enddef;
  def map between perfusion_distributor and acinus_compartment_5 for
    vars Q_b_5 and Q_b;
    vars k_ex_O2_5 and k_ex_O2;
    vars k_ex_CO2_5 and k_ex_CO2;
  enddef;
  def map between perfusion_distributor and pulmonary_blood_pool for
    vars Q_blood_total and Q_blood_total;
  enddef;
  def map between perfusion_distributor and acinus_compartment_1 for
    vars Q_blood_total and Q_blood_total;
  enddef;
  def map between perfusion_distributor and acinus_compartment_2 for
    vars Q_blood_total and Q_blood_total;
  enddef;
  def map between perfusion_distributor and acinus_compartment_3 for
    vars Q_blood_total and Q_blood_total;
  enddef;
  def map between perfusion_distributor and acinus_compartment_4 for
    vars Q_blood_total and Q_blood_total;
  enddef;
  def map between perfusion_distributor and acinus_compartment_5 for
    vars Q_blood_total and Q_blood_total;
  enddef;
  def map between acinus_compartment_1 and perfusion_distributor for
    vars P_A_O2 and P_A_O2_1;
  enddef;
  def map between acinus_compartment_2 and perfusion_distributor for
    vars P_A_O2 and P_A_O2_2;
  enddef;
  def map between acinus_compartment_3 and perfusion_distributor for
    vars P_A_O2 and P_A_O2_3;
  enddef;
  def map between acinus_compartment_4 and perfusion_distributor for
    vars P_A_O2 and P_A_O2_4;
  enddef;
  def map between acinus_compartment_5 and perfusion_distributor for
    vars P_A_O2 and P_A_O2_5;
  enddef;
  def map between acinus_compartment_1 and pulmonary_blood_pool for
    vars I_ex_O2 and I_ex_O2_1;
    vars I_ex_CO2 and I_ex_CO2_1;
  enddef;
  def map between acinus_compartment_2 and pulmonary_blood_pool for
    vars I_ex_O2 and I_ex_O2_2;
    vars I_ex_CO2 and I_ex_CO2_2;
  enddef;
  def map between acinus_compartment_3 and pulmonary_blood_pool for
    vars I_ex_O2 and I_ex_O2_3;
    vars I_ex_CO2 and I_ex_CO2_3;
  enddef;
  def map between acinus_compartment_4 and pulmonary_blood_pool for
    vars I_ex_O2 and I_ex_O2_4;
    vars I_ex_CO2 and I_ex_CO2_4;
  enddef;
  def map between acinus_compartment_5 and pulmonary_blood_pool for
    vars I_ex_O2 and I_ex_O2_5;
    vars I_ex_CO2 and I_ex_CO2_5;
  enddef;
  def map between pulmonary_blood_pool and acinus_compartment_1 for
    vars P_b_O2 and P_b_O2;
    vars P_b_CO2 and P_b_CO2;
  enddef;
  def map between pulmonary_blood_pool and acinus_compartment_2 for
    vars P_b_O2 and P_b_O2;
    vars P_b_CO2 and P_b_CO2;
  enddef;
  def map between pulmonary_blood_pool and acinus_compartment_3 for
    vars P_b_O2 and P_b_O2;
    vars P_b_CO2 and P_b_CO2;
  enddef;
  def map between pulmonary_blood_pool and acinus_compartment_4 for
    vars P_b_O2 and P_b_O2;
    vars P_b_CO2 and P_b_CO2;
  enddef;
  def map between pulmonary_blood_pool and acinus_compartment_5 for
    vars P_b_O2 and P_b_O2;
    vars P_b_CO2 and P_b_CO2;
  enddef;
  def map between pulmonary_blood_pool and systemic_circulation for
    vars C_sys_O2 and C_s_O2;
    vars C_sys_CO2 and C_s_CO2;
    vars C_b_O2 and C_b_O2_init;
    vars C_b_CO2 and C_b_CO2_init;
  enddef;
enddef;
