// creator: Family Terkildsen; Given Jonna; j.terkildsen@auckland.ac.nz; Orgname Auckland Bioengineering Institute
// created: W3CDTF 2009-05-27
def model acid_base as
  def import using "Units/Units.cellml" for
    unit mM using unit mM;
    unit mM_per_s using unit mM_per_s;
    unit mV using unit mV;
    unit mmHg using unit mmHg;
    unit mM_per_mmHg using unit mM_per_mmHg;
    unit mS_per_cm2 using unit mS_per_cm2;
    unit mA_per_cm2 using unit mA_per_cm2;
    unit C_per_mol using unit C_per_mol;
    unit cm_per_s using unit cm_per_s;
    unit mJ_per_mol_per_kelvin using unit mJ_per_mol_per_kelvin;
    unit umol_per_s_per_cm2 using unit umol_per_s_per_cm2;
  enddef;
  def import using "NHE3/Weinstein_1995_NHE3.cellml" for
    comp NHE3 using comp NHE3;
  enddef;
  def import using "HATPase/Weinstein_2000_HATPase.cellml" for
    comp H_ATPase using comp H_ATPase;
  enddef;
  def import using "NaK/Strieter_1992_NaK.cellml" for
    comp NaK using comp NaK;
  enddef;
  def import using "NBC/Ostby_2009_NBC.cellml" for
    comp NBC using comp NBC;
  enddef;
  def import using "Diffusion/Diffusion.cellml" for
    comp Na_diffusion using comp Diffusion;
  enddef;
  def import using "Diffusion/Diffusion.cellml" for
    comp HCO3_diffusion using comp Diffusion;
  enddef;
  def import using "Diffusion/Diffusion.cellml" for
    comp K_diffusion using comp Diffusion;
  enddef;
  def import using "Diffusion/Diffusion.cellml" for
    comp NH3_diffusion using comp Diffusion;
  enddef;
  def import using "Diffusion/Diffusion.cellml" for
    comp CO2_diffusion_apical using comp Diffusion;
  enddef;
  def import using "Diffusion/Diffusion.cellml" for
    comp CO2_diffusion_basal using comp Diffusion;
  enddef;
  def import using "Diffusion/Diffusion.cellml" for
    comp CO2_diffusion_vessel using comp Diffusion;
  enddef;
  def import using "CO2/CO2.cellml" for
    comp CO2_hydration_pt using comp Hydration;
  enddef;
  def import using "CO2/CO2.cellml" for
    comp CO2_hydration_ec using comp Hydration;
  enddef;
  def import using "CO2/CO2.cellml" for
    comp CO2_hydration_if using comp Hydration;
  enddef;
  def import using "CO2/CO2.cellml" for
    comp CO2_hydration_cb using comp Hydration;
  enddef;
  def import using "Ammonia/Ammonia.cellml" for
    comp NH3_hydration_pt using comp Hydration;
  enddef;
  def import using "Ammonia/Ammonia.cellml" for
    comp NH3_hydration_ec using comp Hydration;
  enddef;
  def import using "Ammonia/Ammonia.cellml" for
    comp HPO4_hydration_pt using comp Hydration;
  enddef;

  def comp parameters as
    var theta_NHE3: dimensionless {init: 0, pub: out};
    var theta_Vtype: dimensionless {init: 0, pub: out};
    var theta_NaK: dimensionless {init: 0, pub: out};
    var theta_NBC: dimensionless {init: 0, pub: out};
    var theta_NH4: dimensionless {init: 0, pub: out};
    var theta_hyd_pt: dimensionless {init: 0, pub: out};
    var theta_hyd_ec: dimensionless {init: 0, pub: out};
    var theta_hyd_if: dimensionless {init: 0, pub: out};
    var theta_hyd_cb: dimensionless {init: 0, pub: out};
    var theta_amn_pt: dimensionless {init: 0, pub: out};
    var theta_amn_ec: dimensionless {init: 0, pub: out};
    var theta_phs_pt: dimensionless {init: 0, pub: out};
    var theta_diff_Na: dimensionless {init: 0, pub: out};
    var theta_diff_HCO3: dimensionless {init: 0, pub: out};
    var theta_diff_K: dimensionless {init: 0, pub: out};
    var theta_diff_NH3: dimensionless {init: 0, pub: out};
    var theta_diff_CO2_apical: dimensionless {init: 0, pub: out};
    var theta_diff_CO2_basal: dimensionless {init: 0, pub: out};
    var theta_diff_CO2_vessel: dimensionless {init: 0, pub: out};
    var F: C_per_mol {init: 96485, pub: out};
    var pK_HCO3: dimensionless {init: 6.1, pub: out};
    var pK_HPO4: dimensionless {init: 6.8, pub: out};
    var pK_NH3: dimensionless {init: 9.15, pub: out};
    // Krahn, T. A., & Weinstein, A. M. (1996). Acid/base transport in a model of the proximal tubule brush border: impact of carbonic anhydrase. American Journal of Physiology-Renal Physiology, 270(2), F344-F355.
    // Weinstein, A. M. (1994). Ammonia transport in a mathematical model of rat proximal tubule. American Journal of Physiology-Renal Physiology, 267(2), F237-F248.
    var D_Na: cm_per_s {init: 0.58, pub: out};
    var D_K: cm_per_s {init: 0.5e-6, pub: out};
    var D_Cl: cm_per_s {init: 9.1e-5, pub: out};
    var D_HCO3: cm_per_s {init: 0.2e-7, pub: out};
    var D_H2CO2: cm_per_s {init: 0.1, pub: out};
    var D_H2CO3: cm_per_s {init: 1.28e-3, pub: out};
    var D_CO2: cm_per_s {init: 0.15, pub: out};
    var D_NH3: cm_per_s {init: 6.2e-2, pub: out};
    var s_CO2: mM_per_mmHg {init: 0.03, pub: out};
    var p_CO2: mmHg {init: 50, pub: out};
    var J_pt_H: umol_per_s_per_cm2 {init: 0.0, pub: out};
    var J_pt_HCO3: umol_per_s_per_cm2 {init: 0.0, pub: out};
    var J_pt_Na: umol_per_s_per_cm2 {init: 0.0, pub: out};
    var J_ec_NH4: umol_per_s_per_cm2 {init: 0e-6, pub: out};
    var J_cb_K: umol_per_s_per_cm2 {init: 0.0, pub: out};
    var J_cb_Na: umol_per_s_per_cm2 {init: 0.0, pub: out};
    var J_cb_H: umol_per_s_per_cm2 {init: 0.0, pub: out};
    var J_cb_HCO3: umol_per_s_per_cm2 {init: 0.0, pub: out};
  enddef;

  def comp renal_proximal_tubule as
    var pH_pt: dimensionless {init: 7.306, priv: out};
    var Na_pt: mM {init: 140.0, priv: out};
    var K_pt: mM {init: 4.9, priv: out};
    var Cl_pt: mM {init: 113.2, priv: out};
    var HCO3_pt: mM {init: 24.0, priv: out};
    var H2CO3_pt: mM {init: 4.41e-3, priv: out};
    var CO2_pt: mM {init: 1.5, priv: out};
    var HPO4_pt: mM {init: 2.97, priv: out};
    var H2PO4_pt: mM {init: 0.93, priv: out};
    var urea_pt: mM {init: 5.0, priv: out};
    var NH3_pt: mM {init: 2.82e-3, priv: out};
    var NH4_pt: mM {init: 0.2, priv: out};
    var H_pt: mM {priv: out};
    var HCO2_pt: mM {init: 1.0, priv: out};
    var H2CO2_pt: mM {init: 2.85e-4, priv: out};
    var glucose_pt: mM {init: 5.0, priv: out};
    var J_NHE3_H: umol_per_s_per_cm2 {priv: in};
    var J_NHE3_Na: umol_per_s_per_cm2 {priv: in};
    var J_NHE3_NH4: umol_per_s_per_cm2 {priv: in};
    var J_Vtype_H: umol_per_s_per_cm2 {priv: in};
    var J_diff_CO2_apical: umol_per_s_per_cm2 {priv: in};
    var J_diff_NH3: umol_per_s_per_cm2 {priv: in};
    var J_hyd_pt: mM_per_s {priv: in};
    var J_amn_pt: mM_per_s {priv: in};
    var J_phs_pt: mM_per_s {priv: in};
    var pK_HCO3: dimensionless {priv: out, pub: in};
    var pK_NH3: dimensionless {priv: out, pub: in};
    var pK_HPO4: dimensionless {priv: out, pub: in};
    var s_CO2: mM_per_mmHg {pub: in};
    var p_CO2: mmHg {pub: in};
    var D_CO2: cm_per_s {priv: out, pub: in};
    var D_NH3: cm_per_s {priv: out, pub: in};
    var theta_NHE3: dimensionless {pub: in};
    var theta_Vtype: dimensionless {pub: in};
    var theta_diff_NH3: dimensionless {pub: in};
    var theta_hyd_pt: dimensionless {pub: in};
    var theta_amn_pt: dimensionless {pub: in};
    var theta_phs_pt: dimensionless {pub: in};
    var theta_diff_CO2_apical: dimensionless {pub: in};
    var J_pt_H: umol_per_s_per_cm2 {pub: in};
    var J_pt_HCO3: umol_per_s_per_cm2 {pub: in};
    var J_pt_Na: umol_per_s_per_cm2 {pub: in};
    var beta_CO2: mM;
    var alpha_NH3: dimensionless;
    var time: second {pub: in};
    H_pt = sel
      case pH_pt < 0{dimensionless}:
        1e3{mM};
      case pH_pt >= 0{dimensionless}:
        1e3{mM}*pow(10{dimensionless}, -pH_pt);
    endsel;
    ode(Na_pt, time) = J_pt_Na+theta_NHE3*J_NHE3_Na;
    ode(HPO4_pt, time) = theta_phs_pt*J_phs_pt;
    ode(H2PO4_pt, time) = -theta_phs_pt*J_phs_pt;
    ode(NH4_pt, time) = theta_NHE3*J_NHE3_NH4-theta_amn_pt*J_amn_pt;
    ode(NH3_pt, time) = -theta_diff_NH3*J_diff_NH3+theta_amn_pt*J_amn_pt;
    alpha_NH3 = H_pt/(H_pt+1e3{mM}*pow(10{dimensionless}, -pK_NH3));
    beta_CO2 = ln(10{dimensionless})*HCO3_pt;
    ode(CO2_pt, time) = theta_diff_CO2_apical*J_diff_CO2_apical-theta_hyd_pt*J_hyd_pt;
    ode(HCO3_pt, time) = J_pt_HCO3+theta_hyd_pt*J_hyd_pt;
    ode(pH_pt, time) = -(J_pt_H+theta_NHE3*J_NHE3_H+theta_Vtype*J_Vtype_H+theta_hyd_pt*J_hyd_pt+theta_amn_pt*J_amn_pt+theta_phs_pt*J_phs_pt)/beta_CO2;
  enddef;

  def comp renal_epithelial_cell as
    var pH_ec: dimensionless {init: 7.329, priv: out};
    var Na_ec: mM {init: 19.6, priv: out};
    var K_ec: mM {init: 138.1, priv: out};
    var Cl_ec: mM {init: 16.3, priv: out};
    var HCO3_ec: mM {init: 25.0, priv: out};
    var H2CO3_ec: mM {init: 4.36e-3, priv: out};
    var CO2_ec: mM {init: 1.49, priv: out};
    var HPO4_ec: mM {init: 8.5, priv: out};
    var H2PO4_ec: mM {init: 2.52, priv: out};
    var urea_ec: mM {init: 4.96, priv: out};
    var NH3_ec: mM {init: 3.48e-3, priv: out};
    var NH4_ec: mM {init: 0.23, priv: out};
    var H_ec: mM {priv: out};
    var HCO2_ec: mM {init: 0.52, priv: out};
    var H2CO2_ec: mM {init: 0.91e-4, priv: out};
    var glucose_ec: mM {init: 15.1, priv: out};
    var J_NaK_max: umol_per_s_per_cm2 {init: 0.0108, priv: out};
    var V_m: mV {priv: out};
    var pK_HCO3: dimensionless {priv: out, pub: in};
    var pK_HPO4: dimensionless {priv: out, pub: in};
    var pK_NH3: dimensionless {priv: out, pub: in};
    var s_CO2: mM_per_mmHg {pub: in};
    var p_CO2: mmHg {pub: in};
    var F: C_per_mol {pub: in};
    var J_NHE3_H: umol_per_s_per_cm2 {priv: in};
    var J_NHE3_Na: umol_per_s_per_cm2 {priv: in};
    var J_NHE3_NH4: umol_per_s_per_cm2 {priv: in};
    var J_Vtype_H: umol_per_s_per_cm2 {priv: in};
    var J_NaK_Na: umol_per_s_per_cm2 {priv: in};
    var J_NaK_K: umol_per_s_per_cm2 {priv: in};
    var I_NaK: mA_per_cm2 {priv: in};
    var J_NBC_Na: umol_per_s_per_cm2 {priv: in};
    var J_NBC_HCO3: umol_per_s_per_cm2 {priv: in};
    var J_diff_NH3: umol_per_s_per_cm2 {priv: in};
    var J_diff_CO2_apical: umol_per_s_per_cm2 {priv: in};
    var J_diff_CO2_basal: umol_per_s_per_cm2 {priv: in};
    var J_hyd_ec: mM_per_s {priv: in};
    var J_amn_ec: mM_per_s {priv: in};
    var theta_NHE3: dimensionless {pub: in};
    var theta_Vtype: dimensionless {pub: in};
    var theta_NaK: dimensionless {pub: in};
    var theta_NBC: dimensionless {pub: in};
    var theta_NH4: dimensionless {pub: in};
    var theta_hyd_ec: dimensionless {pub: in};
    var theta_amn_ec: dimensionless {pub: in};
    var theta_diff_NH3: dimensionless {pub: in};
    var theta_diff_CO2_apical: dimensionless {pub: in};
    var theta_diff_CO2_basal: dimensionless {pub: in};
    var J_ec_NH4: umol_per_s_per_cm2 {pub: in};
    var g_NBC: mS_per_cm2 {priv: in};
    var g_Na: mS_per_cm2 {init: 100};
    var g_K: mS_per_cm2 {init: 100};
    var D_CO2: cm_per_s {priv: out, pub: in};
    var D_NH3: cm_per_s {priv: out, pub: in};
    var E_NBC: mV {priv: in};
    var beta_CO2: mM;
    var time: second {pub: in};
    H_ec = sel
      case pH_ec < 0{dimensionless}:
        1e3{mM};
      case pH_ec >= 0{dimensionless}:
        1e3{mM}*pow(10{dimensionless}, -pH_ec);
    endsel;
    beta_CO2 = ln(10{dimensionless})*HCO3_ec;
    V_m = (theta_NBC*g_NBC*E_NBC-theta_NaK*I_NaK)/(g_Na+g_K+theta_NBC*g_NBC);
    ode(Na_ec, time) = -theta_NHE3*J_NHE3_Na-theta_NaK*3{dimensionless}*J_NaK_Na-theta_NBC*J_NBC_Na;
    ode(NH3_ec, time) = theta_diff_NH3*J_diff_NH3+theta_amn_ec*J_amn_ec;
    ode(NH4_ec, time) = -theta_NHE3*J_NHE3_NH4-theta_amn_ec*J_amn_ec+J_ec_NH4;
    ode(K_ec, time) = theta_NaK*2{dimensionless}*J_NaK_K;
    ode(CO2_ec, time) = theta_diff_CO2_apical*J_diff_CO2_apical+theta_diff_CO2_basal*J_diff_CO2_basal;
    ode(HCO3_ec, time) = theta_hyd_ec*J_hyd_ec;
    ode(pH_ec, time) = (theta_NHE3*J_NHE3_H+theta_Vtype*J_Vtype_H-theta_NBC*J_NBC_HCO3-theta_amn_ec*J_amn_ec)/beta_CO2;
  enddef;

  def comp renal_interstitial_fluid as
    var pH_if: dimensionless {init: 7.339, priv: out};
    var Na_if: mM {init: 140.3, priv: out};
    var K_if: mM {init: 4.66, priv: out};
    var Cl_if: mM {init: 112.0, priv: out};
    var HCO3_if: mM {init: 25.6, priv: out};
    var H2CO3_if: mM {init: 4.36e-3, priv: out};
    var CO2_if: mM {init: 1.49, priv: out};
    var HPO4_if: mM {init: 2.98, priv: out};
    var H2PO4_if: mM {init: 0.86, priv: out};
    var urea_if: mM {init: 4.91, priv: out};
    var NH3_if: mM {init: 2.7e-3, priv: out};
    var NH4_if: mM {init: 0.18, priv: out};
    var H_if: mM {priv: out};
    var HCO2_if: mM {init: 0.77, priv: out};
    var H2CO2_if: mM {init: 2.04e-4, priv: out};
    var glucose_if: mM {init: 7.79, priv: out};
    var pK_HCO3: dimensionless {pub: in};
    var pK_HPO4: dimensionless {pub: in};
    var pK_NH3: dimensionless {pub: in};
    var s_CO2: mM_per_mmHg {pub: in};
    var p_CO2: mmHg {pub: in};
    var J_NaK_Na: umol_per_s_per_cm2 {priv: in};
    var J_NaK_K: umol_per_s_per_cm2 {priv: in};
    var J_NBC_Na: umol_per_s_per_cm2 {priv: in};
    var J_NBC_HCO3: umol_per_s_per_cm2 {priv: in};
    var J_diff_HCO3: umol_per_s_per_cm2 {priv: in};
    var J_diff_Na: umol_per_s_per_cm2 {priv: in};
    var J_diff_K: umol_per_s_per_cm2 {priv: in};
    var J_diff_CO2_basal: umol_per_s_per_cm2 {priv: in};
    var J_diff_CO2_vessel: umol_per_s_per_cm2 {priv: in};
    var J_hyd_if: mM_per_s {priv: in};
    var theta_NaK: dimensionless {pub: in};
    var theta_NBC: dimensionless {pub: in};
    var theta_hyd_if: dimensionless {pub: in};
    var theta_diff_HCO3: dimensionless {pub: in};
    var theta_diff_Na: dimensionless {pub: in};
    var theta_diff_K: dimensionless {pub: in};
    var theta_diff_CO2_basal: dimensionless {pub: in};
    var theta_diff_CO2_vessel: dimensionless {pub: in};
    var D_HCO3: cm_per_s {priv: out, pub: in};
    var D_NH3: cm_per_s {priv: out, pub: in};
    var D_CO2: cm_per_s {priv: out, pub: in};
    var beta_CO2: mM;
    var time: second {pub: in};
    H_if = sel
      case pH_if < 0{dimensionless}:
        1e3{mM};
      case pH_if >= 0{dimensionless}:
        1e3{mM}*pow(10{dimensionless}, -pH_if);
    endsel;
    beta_CO2 = ln(10{dimensionless})*HCO3_if;
    ode(Na_if, time) = theta_NBC*J_NBC_Na+theta_NaK*3{dimensionless}*J_NaK_Na+theta_diff_Na*J_diff_Na;
    ode(K_if, time) = theta_diff_K*J_diff_K-theta_NaK*2{dimensionless}*J_NaK_K;
    ode(CO2_if, time) = -theta_diff_CO2_basal*J_diff_CO2_basal+theta_diff_CO2_vessel*J_diff_CO2_vessel;
    ode(HCO3_if, time) = theta_hyd_if*J_hyd_if;
    ode(pH_if, time) = (theta_NBC*J_NBC_HCO3+theta_diff_HCO3*J_diff_HCO3)/beta_CO2;
  enddef;

  def comp peritubular_capillary_blood as
    var pH_cb: dimensionless {init: 7.306, priv: out};
    var Na_cb: mM {init: 140.0, priv: out};
    var K_cb: mM {init: 4.9, priv: out};
    var Cl_cb: mM {init: 113.2, priv: out};
    var HCO3_cb: mM {init: 24.0, priv: out};
    var H2CO3_cb: mM {init: 4.41e-3, priv: out};
    var CO2_cb: mM {init: 1.5, priv: out};
    var HPO4_cb: mM {init: 2.97, priv: out};
    var H2PO4_cb: mM {init: 0.93, priv: out};
    var urea_cb: mM {init: 5.0, priv: out};
    var NH3_cb: mM {init: 2.82e-3, priv: out};
    var NH4_cb: mM {init: 0.2, priv: out};
    var H_cb: mM {priv: out};
    var HCO2_cb: mM {init: 1.0, priv: out};
    var H2CO2_cb: mM {init: 2.85e-4, priv: out};
    var glucose_cb: mM {init: 5.0, priv: out};
    var pK_HCO3: dimensionless {pub: in};
    var pK_HPO4: dimensionless {pub: in};
    var pK_NH3: dimensionless {pub: in};
    var s_CO2: mM_per_mmHg {pub: in};
    var p_CO2: mmHg {pub: in};
    var J_diff_HCO3: umol_per_s_per_cm2 {priv: in};
    var J_diff_Na: umol_per_s_per_cm2 {priv: in};
    var J_diff_K: umol_per_s_per_cm2 {priv: in};
    var J_diff_CO2_vessel: umol_per_s_per_cm2 {priv: in};
    var J_hyd_cb: mM_per_s {priv: in};
    var D_HCO3: cm_per_s {priv: out, pub: in};
    var D_Na: cm_per_s {priv: out, pub: in};
    var D_K: cm_per_s {priv: out, pub: in};
    var D_NH3: cm_per_s {priv: out, pub: in};
    var D_CO2: cm_per_s {priv: out, pub: in};
    var theta_hyd_cb: dimensionless {pub: in};
    var theta_diff_HCO3: dimensionless {pub: in};
    var theta_diff_Na: dimensionless {pub: in};
    var theta_diff_K: dimensionless {pub: in};
    var theta_diff_CO2_vessel: dimensionless {pub: in};
    var J_cb_K: umol_per_s_per_cm2 {pub: in};
    var J_cb_Na: umol_per_s_per_cm2 {pub: in};
    var J_cb_H: umol_per_s_per_cm2 {pub: in};
    var J_cb_HCO3: umol_per_s_per_cm2 {pub: in};
    var beta_CO2: mM;
    var time: second {pub: in};
    H_cb = sel
      case pH_cb < 0{dimensionless}:
        1e3{mM};
      case pH_cb >= 0{dimensionless}:
        1e3{mM}*pow(10{dimensionless}, -pH_cb);
    endsel;
    beta_CO2 = ln(10{dimensionless})*HCO3_cb;
    ode(Na_cb, time) = -J_cb_Na-theta_diff_Na*J_diff_Na;
    ode(K_cb, time) = -J_cb_K-theta_diff_K*J_diff_K;
    ode(CO2_cb, time) = -theta_diff_CO2_vessel*J_diff_CO2_vessel;
    ode(HCO3_cb, time) = theta_hyd_cb*J_hyd_cb;
    ode(pH_cb, time) = (J_cb_H-J_cb_HCO3-theta_diff_HCO3*J_diff_HCO3)/beta_CO2;
  enddef;

  def group as encapsulation for
    comp renal_proximal_tubule incl
      comp NHE3;
      comp H_ATPase;
      comp NH3_diffusion;
      comp CO2_diffusion_apical;
      comp CO2_hydration_pt;
      comp NH3_hydration_pt;
      comp HPO4_hydration_pt;
    endcomp;
    comp renal_epithelial_cell incl
      comp NHE3;
      comp H_ATPase;
      comp NaK;
      comp NBC;
      comp NH3_diffusion;
      comp CO2_diffusion_apical;
      comp CO2_diffusion_basal;
      comp CO2_hydration_ec;
      comp NH3_hydration_ec;
    endcomp;
    comp renal_interstitial_fluid incl
      comp NaK;
      comp NBC;
      comp HCO3_diffusion;
      comp Na_diffusion;
      comp K_diffusion;
      comp CO2_diffusion_basal;
      comp CO2_diffusion_vessel;
      comp CO2_hydration_if;
    endcomp;
    comp peritubular_capillary_blood incl
      comp HCO3_diffusion;
      comp Na_diffusion;
      comp K_diffusion;
      comp CO2_diffusion_vessel;
      comp CO2_hydration_cb;
    endcomp;
  enddef;
  def map between renal_proximal_tubule and parameters for
    vars theta_NHE3 and theta_NHE3;
    vars theta_Vtype and theta_Vtype;
    vars theta_hyd_pt and theta_hyd_pt;
    vars theta_amn_pt and theta_amn_pt;
    vars theta_phs_pt and theta_phs_pt;
    vars theta_diff_CO2_apical and theta_diff_CO2_apical;
    vars theta_diff_NH3 and theta_diff_NH3;
    vars J_pt_H and J_pt_H;
    vars J_pt_HCO3 and J_pt_HCO3;
    vars J_pt_Na and J_pt_Na;
    vars p_CO2 and p_CO2;
    vars s_CO2 and s_CO2;
    vars pK_HCO3 and pK_HCO3;
    vars pK_HPO4 and pK_HPO4;
    vars pK_NH3 and pK_NH3;
    vars D_CO2 and D_CO2;
    vars D_NH3 and D_NH3;
  enddef;
  def map between renal_proximal_tubule and NHE3 for
    vars H_pt and H_ext;
    vars Na_pt and Na_ext;
    vars NH4_pt and NH4_ext;
    vars J_NHE3_H and J_NHE3_H;
    vars J_NHE3_Na and J_NHE3_Na;
    vars J_NHE3_NH4 and J_NHE3_NH4;
  enddef;
  def map between renal_proximal_tubule and H_ATPase for
    vars H_pt and H_ext;
    vars J_Vtype_H and J_Vtype_H;
  enddef;
  def map between renal_proximal_tubule and NH3_diffusion for
    vars NH3_pt and C_ext;
    vars J_diff_NH3 and J_diff;
    vars D_NH3 and D;
  enddef;
  def map between renal_proximal_tubule and CO2_diffusion_apical for
    vars CO2_pt and C_ext;
    vars J_diff_CO2_apical and J_diff;
    vars D_CO2 and D;
  enddef;
  def map between renal_proximal_tubule and CO2_hydration_pt for
    vars pH_pt and pH;
    vars CO2_pt and CO2;
    vars HCO3_pt and HCO3;
    vars J_hyd_pt and J;
  enddef;
  def map between renal_proximal_tubule and NH3_hydration_pt for
    vars pH_pt and pH;
    vars pK_NH3 and pK;
    vars NH3_pt and C_n;
    vars NH4_pt and C_e;
    vars J_amn_pt and J_hyd;
  enddef;
  def map between renal_proximal_tubule and HPO4_hydration_pt for
    vars pH_pt and pH;
    vars pK_HPO4 and pK;
    vars HPO4_pt and C_n;
    vars H2PO4_pt and C_e;
    vars J_phs_pt and J_hyd;
  enddef;
  def map between renal_epithelial_cell and parameters for
    vars theta_NHE3 and theta_NHE3;
    vars theta_Vtype and theta_Vtype;
    vars theta_NaK and theta_NaK;
    vars theta_NBC and theta_NBC;
    vars theta_NH4 and theta_NH4;
    vars theta_hyd_ec and theta_hyd_ec;
    vars theta_amn_ec and theta_amn_ec;
    vars theta_diff_NH3 and theta_diff_NH3;
    vars theta_diff_CO2_apical and theta_diff_CO2_apical;
    vars theta_diff_CO2_basal and theta_diff_CO2_basal;
    vars J_ec_NH4 and J_ec_NH4;
    vars p_CO2 and p_CO2;
    vars s_CO2 and s_CO2;
    vars pK_HCO3 and pK_HCO3;
    vars pK_HPO4 and pK_HPO4;
    vars pK_NH3 and pK_NH3;
    vars D_CO2 and D_CO2;
    vars D_NH3 and D_NH3;
    vars F and F;
  enddef;
  def map between renal_epithelial_cell and NHE3 for
    vars H_ec and H_int;
    vars Na_ec and Na_int;
    vars NH4_ec and NH4_int;
    vars J_NHE3_H and J_NHE3_H;
    vars J_NHE3_Na and J_NHE3_Na;
    vars J_NHE3_NH4 and J_NHE3_NH4;
  enddef;
  def map between renal_epithelial_cell and NBC for
    vars Na_ec and Na_int;
    vars HCO3_ec and HCO3_int;
    vars J_NBC_Na and J_NBC_Na;
    vars J_NBC_HCO3 and J_NBC_HCO3;
    vars V_m and V_m;
    vars E_NBC and E_NBC;
    vars g_NBC and g_NBC;
  enddef;
  def map between renal_epithelial_cell and NaK for
    vars Na_ec and Na_int;
    vars K_ec and K_int;
    vars J_NaK_Na and J_NaK;
    vars J_NaK_K and J_NaK;
    vars J_NaK_max and J_NaK_max;
    vars I_NaK and I_NaK;
    vars V_m and V;
  enddef;
  def map between renal_epithelial_cell and H_ATPase for
    vars H_ec and H_int;
    vars J_Vtype_H and J_Vtype_H;
    vars V_m and psi;
  enddef;
  def map between renal_epithelial_cell and NH3_diffusion for
    vars NH3_ec and C_int;
    vars J_diff_NH3 and J_diff;
  enddef;
  def map between renal_epithelial_cell and CO2_diffusion_apical for
    vars CO2_ec and C_int;
    vars J_diff_CO2_apical and J_diff;
  enddef;
  def map between renal_epithelial_cell and CO2_diffusion_basal for
    vars CO2_ec and C_int;
    vars J_diff_CO2_basal and J_diff;
  enddef;
  def map between renal_epithelial_cell and CO2_hydration_ec for
    vars pH_ec and pH;
    vars CO2_ec and CO2;
    vars HCO3_ec and HCO3;
    vars J_hyd_ec and J;
  enddef;
  def map between renal_epithelial_cell and NH3_hydration_ec for
    vars pH_ec and pH;
    vars pK_NH3 and pK;
    vars NH3_ec and C_n;
    vars NH4_ec and C_e;
    vars J_amn_ec and J_hyd;
  enddef;
  def map between renal_interstitial_fluid and parameters for
    vars theta_NaK and theta_NaK;
    vars theta_NBC and theta_NBC;
    vars theta_hyd_if and theta_hyd_if;
    vars theta_diff_Na and theta_diff_Na;
    vars theta_diff_HCO3 and theta_diff_HCO3;
    vars theta_diff_K and theta_diff_K;
    vars theta_diff_CO2_basal and theta_diff_CO2_basal;
    vars theta_diff_CO2_vessel and theta_diff_CO2_vessel;
    vars p_CO2 and p_CO2;
    vars s_CO2 and s_CO2;
    vars pK_HCO3 and pK_HCO3;
    vars pK_HPO4 and pK_HPO4;
    vars pK_NH3 and pK_NH3;
    vars D_CO2 and D_CO2;
    vars D_NH3 and D_NH3;
    vars D_HCO3 and D_HCO3;
  enddef;
  def map between renal_interstitial_fluid and NaK for
    vars Na_if and Na_ext;
    vars K_if and K_ext;
    vars J_NaK_Na and J_NaK;
    vars J_NaK_K and J_NaK;
  enddef;
  def map between renal_interstitial_fluid and NBC for
    vars HCO3_if and HCO3_ext;
    vars Na_if and Na_ext;
    vars J_NBC_Na and J_NBC_Na;
    vars J_NBC_HCO3 and J_NBC_HCO3;
  enddef;
  def map between renal_interstitial_fluid and Na_diffusion for
    vars Na_if and C_int;
    vars J_diff_Na and J_diff;
  enddef;
  def map between renal_interstitial_fluid and HCO3_diffusion for
    vars HCO3_if and C_int;
    vars J_diff_HCO3 and J_diff;
  enddef;
  def map between renal_interstitial_fluid and K_diffusion for
    vars K_if and C_int;
    vars J_diff_K and J_diff;
  enddef;
  def map between renal_interstitial_fluid and CO2_diffusion_basal for
    vars CO2_if and C_ext;
    vars J_diff_CO2_basal and J_diff;
    vars D_CO2 and D;
  enddef;
  def map between renal_interstitial_fluid and CO2_diffusion_vessel for
    vars CO2_if and C_int;
    vars J_diff_CO2_vessel and J_diff;
  enddef;
  def map between renal_interstitial_fluid and CO2_hydration_if for
    vars pH_if and pH;
    vars CO2_if and CO2;
    vars HCO3_if and HCO3;
    vars J_hyd_if and J;
  enddef;
  def map between peritubular_capillary_blood and parameters for
    vars theta_hyd_cb and theta_hyd_cb;
    vars theta_diff_HCO3 and theta_diff_HCO3;
    vars theta_diff_Na and theta_diff_Na;
    vars theta_diff_K and theta_diff_K;
    vars theta_diff_CO2_vessel and theta_diff_CO2_vessel;
    vars J_cb_K and J_cb_K;
    vars J_cb_Na and J_cb_Na;
    vars J_cb_H and J_cb_H;
    vars J_cb_HCO3 and J_cb_HCO3;
    vars p_CO2 and p_CO2;
    vars s_CO2 and s_CO2;
    vars pK_HCO3 and pK_HCO3;
    vars pK_HPO4 and pK_HPO4;
    vars pK_NH3 and pK_NH3;
    vars D_CO2 and D_CO2;
    vars D_NH3 and D_NH3;
    vars D_HCO3 and D_HCO3;
    vars D_K and D_K;
    vars D_Na and D_Na;
  enddef;
  def map between peritubular_capillary_blood and Na_diffusion for
    vars Na_cb and C_ext;
    vars J_diff_Na and J_diff;
    vars D_Na and D;
  enddef;
  def map between peritubular_capillary_blood and HCO3_diffusion for
    vars HCO3_cb and C_ext;
    vars J_diff_HCO3 and J_diff;
    vars D_HCO3 and D;
  enddef;
  def map between peritubular_capillary_blood and K_diffusion for
    vars K_cb and C_ext;
    vars J_diff_K and J_diff;
    vars D_K and D;
  enddef;
  def map between peritubular_capillary_blood and CO2_diffusion_vessel for
    vars CO2_cb and C_ext;
    vars J_diff_CO2_vessel and J_diff;
    vars D_CO2 and D;
  enddef;
  def map between peritubular_capillary_blood and CO2_hydration_cb for
    vars pH_cb and pH;
    vars CO2_cb and CO2;
    vars HCO3_cb and HCO3;
    vars J_hyd_cb and J;
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;
  def map between environment and renal_proximal_tubule for
    vars time and time;
  enddef;
  def map between environment and renal_epithelial_cell for
    vars time and time;
  enddef;
  def map between environment and renal_interstitial_fluid for
    vars time and time;
  enddef;
  def map between environment and peritubular_capillary_blood for
    vars time and time;
  enddef;
enddef;
// #weinstein_1995
// reference: subject_type keyword; Na/H antiporter; ion transport; kidney; proximal tubule; renal
// reference: Pubmed_id 7658195; Family Weinstein; Given A; Other M; title A kinetically defined Na+/H+ antiporter within a mathematical model of the rat proximal tubule; title The Journal of General Physiology; volume 105; first_page 617; last_page 641
