// This CellML file was generated on 6/04/2010 at 3:58:55 at p.m. using:
//
// COR (0.9.31.1371)
// Copyright 2002-2010 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: Family Nunns; Given Geoffrey; Other Rogan; gnunns1@jhu.edu; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2010-03-31
// title: The Albert et al. 2005 model of glycolytic flux control in T. brucei
// comment: This is the CellML description of Albert et al.'s mathematical model of glycolytic flux control in T. brucei; FN Geoffrey Nunns
// species: Trypanosoma brucei
// reference: subject_type keyword; metabolism; glycolysis
// reference: Pubmed_id 15955817; Family Albert; Given Marie-Astrid; Family Hanstra; Given Jurgen; Other R; Family Hannaert; Given Veronique; Family Van Roy; Given Joris; Family Opperdoes; Given Fred; Other R; Family Bakker; Given Barbara; Other M; Family Michels; Given Paul; Other A; Other M; title Experimental and in Silico Analyses of Glycolytic Flux Control in Bloodstream Form Trypanosoma brucei; W3CDTF 2005-06-14; title Journal of Biological Chemistry; volume 280; first_page 28306; last_page 28315
def model albert_2005 as
  // Experimental and in Silico Analyses of Glycolytic Flux Control in Bloodstream Form Trypanosoma brucei
  //
  // Geoffrey Nunns
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in PCenv, COR and OpenCell and the units are consistent throughout. It is unclear at this stage at to whether it recreates the published results. It was adapted from the Biomodels Database with the help of Lukas Endler (available: http://www.ebi.ac.uk/biomodels-main/BIOMD0000000211).
  //
  // Model Structure
  //
  // ABSTRACT: A mathematical model of glycolysis in bloodstream form Trypanosoma brucei was developed previously on the basis of all available enzyme kinetic data (Bakker, B. M., Michels, P. A. M., Opperdoes, F. R., and Westerhoff, H. V. (1997) J. Biol. Chem. 272, 3207-3215). The model predicted correctly the fluxes and cellular metabolite concentrations as measured in non-growing trypanosomes and the major contribution to the flux control exerted by the plasma membrane glucose transporter. Surprisingly, a large overcapacity was predicted for hexokinase (HXK), phosphofructokinase (PFK), and pyruvate kinase (PYK). Here, we present our further analysis of the control of glycolytic flux in bloodstream form T. brucei. First, the model was optimized and extended with recent information about the kinetics of enzymes and their activities as measured in lysates of in vitro cultured growing trypanosomes. Second, the concentrations of five glycolytic enzymes (HXK, PFK, phosphoglycerate mutase, enolase, and PYK) in trypanosomes were changed by RNA interference. The effects of the knockdown of these enzymes on the growth, activities, and levels of various enzymes and glycolytic flux were studied and compared with model predictions. Data thus obtained support the conclusion from the in silico analysis that HXK, PFK, and PYK are in excess, albeit less than predicted. Interestingly, depletion of PFK and enolase had an effect on the activity (but not, or to a lesser extent, expression) of some other glycolytic enzymes. Enzymes located both in the glycosomes (the peroxisome-like organelles harboring the first seven enzymes of the glycolytic pathway of trypanosomes) and in the cytosol were affected. These data suggest the existence of novel regulatory mechanisms operating in trypanosome glycolysis.
  //
  // The original paper reference is cited below:
  //
  // Experimental and in silico analyses of glycolytic flux control in bloodstream form Trypanosoma brucei, Marie-Astrid Albert, Jurgen R. Haanstra, Veronique Hannaert, Joris Van Roy, Fred R. Opperdoes, Barbara M. Bakker, and Paul A. M. Michels, 2005, Journal of Biological Chemistry, volume 280, 28306-28315. PubMed ID: 15955817 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=15955817&query_hl=1&itool=pubmed_docsum)
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit liter {expo: -1};
  enddef;
  def unit mM_per_minute as
    unit mM;
    unit minute {expo: -1};
  enddef;
  def unit rate as
    unit mole {pref: nano};
    unit gram {pref: milli, expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit ul_per_mg as
    unit liter {pref: micro};
    unit gram {pref: milli, expo: -1};
  enddef;
  def unit per_mM_per_minute as
    unit mM {expo: -1};
    unit minute {expo: -1};
  enddef;
  def unit nanomole_per_mM2_per_minute_per_mg as
    unit mole {pref: nano};
    unit mM {expo: -2};
    unit minute {expo: -1};
    unit gram {pref: milli, expo: -1};
  enddef;
  def unit ul_per_mg_per_minute as
    unit ul_per_mg;
    unit minute {expo: -1};
  enddef;
  def unit ul_per_mg_per_mM_per_minute as
    unit ul_per_mg;
    unit mM {expo: -1};
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
    var total_volume: ul_per_mg {init: 5.7};
    var glycosomal_volume: ul_per_mg {pub: out};
    var cytosolic_volume: ul_per_mg {pub: out};
    glycosomal_volume = total_volume*0.043{dimensionless};
    cytosolic_volume = total_volume*0.957{dimensionless};
  enddef;

  def comp cytosolic_species as
    var pyruvate_cyt: mM {init: 10, pub: out};
    var adp_cyt: mM {init: 1.31652277625, pub: out};
    var atp_cyt: mM {init: 0.341738611875, pub: out};
    var phosphoenolpyruvate_cyt: mM {init: 0, pub: out};
    var twophosphoglycerate_cyt: mM {init: 0, pub: out};
    var amp_cyt: mM {init: 2.24173861188, pub: out};
    var threephosphoglycerate_cyt: mM {init: 0, pub: out};
    var dihydroxyacetonephosphate_cyt: mM {init: 2.23134594788, pub: out};
    var glycerol3phosphate_cyt: mM {init: 2.76865405212, pub: out};
    var time: minute {pub: in};
    var cytosolic_volume: ul_per_mg {pub: in};
    var v_PT: rate {pub: in};
    var v_PK: rate {pub: in};
    var v_AKc: rate {pub: in};
    var v_AU: rate {pub: in};
    var v_ENO: rate {pub: in};
    var v_PGM: rate {pub: in};
    var v_PGT: rate {pub: in};
    var v_ANTI: rate {pub: in};
    var v_GPO: rate {pub: in};
    ode(pyruvate_cyt, time) = -1{dimensionless}*v_PT/cytosolic_volume+1{dimensionless}*v_PK/cytosolic_volume;
    ode(adp_cyt, time) = -1{dimensionless}*v_PK/cytosolic_volume+1{dimensionless}*v_AU/cytosolic_volume+2{dimensionless}*v_AKc/cytosolic_volume;
    ode(atp_cyt, time) = 1{dimensionless}*v_PK/cytosolic_volume-1{dimensionless}*v_AU/cytosolic_volume-1{dimensionless}*v_AKc/cytosolic_volume;
    ode(phosphoenolpyruvate_cyt, time) = -1{dimensionless}*v_PK/cytosolic_volume+1{dimensionless}*v_ENO/cytosolic_volume;
    ode(twophosphoglycerate_cyt, time) = 1{dimensionless}*v_PGM/cytosolic_volume-1{dimensionless}*v_ENO/cytosolic_volume;
    ode(amp_cyt, time) = -1{dimensionless}*v_AKc/cytosolic_volume;
    ode(threephosphoglycerate_cyt, time) = -1{dimensionless}*v_PGM/cytosolic_volume+1{dimensionless}*v_PGT/cytosolic_volume;
    ode(dihydroxyacetonephosphate_cyt, time) = -1{dimensionless}*v_ANTI/cytosolic_volume+1{dimensionless}*v_GPO/cytosolic_volume;
    ode(glycerol3phosphate_cyt, time) = 1{dimensionless}*v_ANTI/cytosolic_volume-1{dimensionless}*v_GPO/cytosolic_volume;
  enddef;

  def comp glycosomal_species as
    var glucose_gly: mM {init: 0, pub: out};
    var atp_gly: mM {init: 0.240501857508, pub: out};
    var adp_gly: mM {init: 1.51899628498, pub: out};
    var amp_gly: mM {init: 4.24050185751, pub: out};
    var glucose6phosphate_gly: mM {init: 0.5, pub: out};
    var fructose6phosphate_gly: mM {init: 0.5, pub: out};
    var fructose16bisphosphate_gly: mM {init: 10, pub: out};
    var dihydroxyacetonephosphate_gly: mM {init: 8.47911460193, pub: out};
    var glyceraldehyde3phosphate_gly: mM {init: 2.5, pub: out};
    var nad_gly: mM {init: 2, pub: out};
    var nadh_gly: mM {init: 2, pub: out};
    var bisphosphoglycerate_gly: mM {init: 0.5, pub: out};
    var glycerol3phosphate_gly: mM {init: 10.5208853981, pub: out};
    var threephosphoglycerate_gly: mM {init: 0, pub: out};
    var glycerol_gly: mM {init: 0, pub: out};
    var time: minute {pub: in};
    var glycosomal_volume: ul_per_mg {pub: in};
    var v_GT: rate {pub: in};
    var v_HK: rate {pub: in};
    var v_AKg: rate {pub: in};
    var v_GK: rate {pub: in};
    var v_PFK: rate {pub: in};
    var v_PGK: rate {pub: in};
    var v_PGI: rate {pub: in};
    var v_ALD: rate {pub: in};
    var v_ANTI: rate {pub: in};
    var v_GPDH: rate {pub: in};
    var v_GAPDH: rate {pub: in};
    var v_TPI: rate {pub: in};
    var v_PGT: rate {pub: in};
    var v_GlyT: rate {pub: in};
    ode(glucose_gly, time) = 1{dimensionless}*v_GT/glycosomal_volume-1{dimensionless}*v_HK/glycosomal_volume;
    ode(atp_gly, time) = -1{dimensionless}*v_HK/glycosomal_volume-1{dimensionless}*v_PFK/glycosomal_volume+1{dimensionless}*v_PGK/glycosomal_volume+1{dimensionless}*v_GK/glycosomal_volume-1{dimensionless}*v_AKg/glycosomal_volume;
    ode(adp_gly, time) = 1{dimensionless}*v_HK/glycosomal_volume+1{dimensionless}*v_PFK/glycosomal_volume-1{dimensionless}*v_PGK/glycosomal_volume-1{dimensionless}*v_GK/glycosomal_volume+2{dimensionless}*v_AKg/glycosomal_volume;
    ode(amp_gly, time) = -1{dimensionless}*v_AKg/glycosomal_volume;
    ode(glucose6phosphate_gly, time) = 1{dimensionless}*v_HK/glycosomal_volume-1{dimensionless}*v_PGI/glycosomal_volume;
    ode(fructose6phosphate_gly, time) = 1{dimensionless}*v_PGI/glycosomal_volume-1{dimensionless}*v_PFK/glycosomal_volume;
    ode(fructose16bisphosphate_gly, time) = 1{dimensionless}*v_PFK/glycosomal_volume-1{dimensionless}*v_ALD/glycosomal_volume;
    ode(dihydroxyacetonephosphate_gly, time) = 1{dimensionless}*v_ALD/glycosomal_volume-1{dimensionless}*v_TPI/glycosomal_volume-1{dimensionless}*v_GPDH/glycosomal_volume+1{dimensionless}*v_ANTI/glycosomal_volume;
    ode(glyceraldehyde3phosphate_gly, time) = 1{dimensionless}*v_ALD/glycosomal_volume-1{dimensionless}*v_GAPDH/glycosomal_volume+1{dimensionless}*v_TPI/glycosomal_volume;
    ode(nad_gly, time) = -1{dimensionless}*v_GAPDH/glycosomal_volume+1{dimensionless}*v_GPDH/glycosomal_volume;
    ode(nadh_gly, time) = 1{dimensionless}*v_GAPDH/glycosomal_volume-1{dimensionless}*v_GPDH/glycosomal_volume;
    ode(bisphosphoglycerate_gly, time) = 1{dimensionless}*v_GAPDH/glycosomal_volume-1{dimensionless}*v_PGK/glycosomal_volume;
    ode(glycerol3phosphate_gly, time) = 1{dimensionless}*v_GPDH/glycosomal_volume-1{dimensionless}*v_GK/glycosomal_volume-1{dimensionless}*v_ANTI/glycosomal_volume;
    ode(threephosphoglycerate_gly, time) = 1{dimensionless}*v_PGK/glycosomal_volume-1{dimensionless}*v_PGT/glycosomal_volume;
    ode(glycerol_gly, time) = 1{dimensionless}*v_GK/glycosomal_volume-1{dimensionless}*v_GlyT/glycosomal_volume;
  enddef;

  def comp extracellular_species as
    var glucose_external: mM {init: 5, pub: out};
    var pyruvate_ext: mM {init: 0, pub: out};
    var glycerol_ext: mM {init: 0, pub: out};
    var time: minute {pub: in};
    ode(glycerol_ext, time) = 0{mM_per_minute};
    ode(glucose_external, time) = 0{mM_per_minute};
    ode(pyruvate_ext, time) = 0{mM_per_minute};
  enddef;

  def comp v_GT as
    var v_GT: rate {pub: out};
    var Vmax_v1: rate {init: 108.9};
    var KGlc: mM {init: 1};
    var Alpha_v1: dimensionless {init: 0.75};
    var glucose_gly: mM {pub: in};
    var glucose_external: mM {pub: in};
    v_GT = Vmax_v1*((glucose_external-glucose_gly)/(KGlc+glucose_external+glucose_gly+Alpha_v1*glucose_external*glucose_gly/KGlc));
  enddef;

  def comp v_HK as
    var v_HK: rate {pub: out};
    var Vmax_v2: rate {init: 1929};
    var KGlcInt_v2: mM {init: 0.1};
    var KATPg_v2: mM {init: 0.116};
    var KADPg_v2: mM {init: 0.126};
    var KGlc6P_v2: mM {init: 12};
    var glucose_gly: mM {pub: in};
    var atp_gly: mM {pub: in};
    var adp_gly: mM {pub: in};
    var glucose6phosphate_gly: mM {pub: in};
    v_HK = Vmax_v2*(glucose_gly/KGlcInt_v2*(atp_gly/KATPg_v2)/((1{dimensionless}+atp_gly/KATPg_v2+adp_gly/KADPg_v2)*(1{dimensionless}+glucose_gly/KGlcInt_v2+glucose6phosphate_gly/KGlc6P_v2)));
  enddef;

  def comp v_PGI as
    var v_PGI: rate {pub: out};
    var Kms_vPGI: mM {init: 0.4};
    var Kmp_vPGI: mM {init: 0.12};
    var Vf_vPGI: rate {init: 1305};
    var Vr_vPGI: rate {init: 1305};
    var glucose6phosphate_gly: mM {pub: in};
    var fructose6phosphate_gly: mM {pub: in};
    v_PGI = (Vf_vPGI*glucose6phosphate_gly/Kms_vPGI-Vr_vPGI*fructose6phosphate_gly/Kmp_vPGI)/(1{dimensionless}+glucose6phosphate_gly/Kms_vPGI+fructose6phosphate_gly/Kmp_vPGI);
  enddef;

  def comp v_PFK as
    var v_PFK: rate {pub: out};
    var Vmax_v4: rate {init: 1708};
    var Ki1Fru16BP_v4: mM {init: 15.8};
    var KFru6P_v4: mM {init: 0.82};
    var KATPg_v4: mM {init: 0.026};
    var Ki2Fru16BP_v4: mM {init: 10.7};
    var atp_gly: mM {pub: in};
    var fructose6phosphate_gly: mM {pub: in};
    var fructose16bisphosphate_gly: mM {pub: in};
    v_PFK = Vmax_v4*(Ki1Fru16BP_v4/(Ki1Fru16BP_v4+fructose16bisphosphate_gly))*(fructose6phosphate_gly/KFru6P_v4*(atp_gly/KATPg_v4)/((1{dimensionless}+fructose6phosphate_gly/KFru6P_v4+fructose16bisphosphate_gly/Ki2Fru16BP_v4)*(1{dimensionless}+atp_gly/KATPg_v4)));
  enddef;

  def comp v_ALD as
    var v_ALD: rate {pub: out};
    var Vmax_v5: rate {init: 560};
    var Keq_v5: mM {init: 0.069};
    var r_v5: dimensionless {init: 1.19};
    var KGAP_v5: mM {init: 0.067};
    var KGAPi_v5: mM {init: 0.098};
    var atp_gly: mM {pub: in};
    var adp_gly: mM {pub: in};
    var amp_gly: mM {pub: in};
    var fructose16bisphosphate_gly: mM {pub: in};
    var dihydroxyacetonephosphate_gly: mM {pub: in};
    var glyceraldehyde3phosphate_gly: mM {pub: in};
    v_ALD = Vmax_v5*(fructose16bisphosphate_gly-glyceraldehyde3phosphate_gly*dihydroxyacetonephosphate_gly/Keq_v5)/(0.009{mM}*(1{dimensionless}+atp_gly/0.68{mM}+adp_gly/1.51{mM}+amp_gly/3.65{mM})+fructose16bisphosphate_gly+glyceraldehyde3phosphate_gly*0.015{mM}*(1{dimensionless}+atp_gly/0.68{mM}+adp_gly/1.51{mM}+amp_gly/3.65{mM})/Keq_v5*(1{dimensionless}/r_v5)+dihydroxyacetonephosphate_gly*KGAP_v5/Keq_v5*(1{dimensionless}/r_v5)+fructose16bisphosphate_gly*glyceraldehyde3phosphate_gly/KGAPi_v5+glyceraldehyde3phosphate_gly*dihydroxyacetonephosphate_gly/Keq_v5*(1{dimensionless}/r_v5));
  enddef;

  def comp v_TPI as
    var v_TPI: rate {pub: out};
    var Kms_vTPI: mM {init: 1.2};
    var Kmp_vTPI: mM {init: 0.25};
    var Vf_vTPI: rate {init: 999.3};
    var Vr_vTPI: rate {init: 5696.01};
    var dihydroxyacetonephosphate_gly: mM {pub: in};
    var glyceraldehyde3phosphate_gly: mM {pub: in};
    v_TPI = (Vf_vTPI*dihydroxyacetonephosphate_gly/Kms_vTPI-Vr_vTPI*glyceraldehyde3phosphate_gly/Kmp_vTPI)/(1{dimensionless}+dihydroxyacetonephosphate_gly/Kms_vTPI+glyceraldehyde3phosphate_gly/Kmp_vTPI);
  enddef;

  def comp v_GAPDH as
    var v_GAPDH: rate {pub: out};
    var Vmax_v7: rate {init: 720.9};
    var KGAP_v7: mM {init: 0.15};
    var KNAD_v7: mM {init: 0.45};
    var r_v7: dimensionless {init: 0.67};
    var KBPGA13_v7: mM {init: 0.1};
    var KNADH_v7: mM {init: 0.02};
    var glyceraldehyde3phosphate_gly: mM {pub: in};
    var nad_gly: mM {pub: in};
    var nadh_gly: mM {pub: in};
    var bisphosphoglycerate_gly: mM {pub: in};
    v_GAPDH = Vmax_v7*(glyceraldehyde3phosphate_gly/KGAP_v7*(nad_gly/KNAD_v7)-r_v7*(bisphosphoglycerate_gly/KBPGA13_v7)*(nadh_gly/KNADH_v7))/((1{dimensionless}+glyceraldehyde3phosphate_gly/KGAP_v7+bisphosphoglycerate_gly/KBPGA13_v7)*(1{dimensionless}+nad_gly/KNAD_v7+nadh_gly/KNADH_v7));
  enddef;

  def comp v_GPDH as
    var v_GPDH: rate {pub: out};
    var Vmax_v8: rate {init: 465};
    var KDHAPg_v8: mM {init: 0.1};
    var KNADH_v8: mM {init: 0.01};
    var r_v8: dimensionless {init: 0.28};
    var KNAD_v8: mM {init: 0.4};
    var KGly3Pg_v8: mM {init: 2};
    var dihydroxyacetonephosphate_gly: mM {pub: in};
    var nad_gly: mM {pub: in};
    var nadh_gly: mM {pub: in};
    var glycerol3phosphate_gly: mM {pub: in};
    v_GPDH = Vmax_v8*(dihydroxyacetonephosphate_gly/KDHAPg_v8*(nadh_gly/KNADH_v8)-r_v8*(nad_gly/KNAD_v8)*(glycerol3phosphate_gly/KGly3Pg_v8))/((1{dimensionless}+dihydroxyacetonephosphate_gly/KDHAPg_v8+glycerol3phosphate_gly/KGly3Pg_v8)*(1{dimensionless}+nadh_gly/KNADH_v8+nad_gly/KNAD_v8));
  enddef;

  def comp v_GPO as
    var v_GPO: rate {pub: out};
    var Km_GPO: mM {init: 1.7};
    var V_GPO_0: rate {init: 368};
    var glycerol3phosphate_cyt: mM {pub: in};
    v_GPO = V_GPO_0*(glycerol3phosphate_cyt/Km_GPO/(1{dimensionless}+glycerol3phosphate_cyt/Km_GPO));
  enddef;

  def comp v_PT as
    var v_PT: rate {pub: out};
    var Km_PT: mM {init: 1.96};
    var V_PT_0: rate {init: 200};
    var pyruvate_cyt: mM {pub: in};
    v_PT = V_PT_0*pyruvate_cyt/(Km_PT+pyruvate_cyt);
  enddef;

  def comp v_PGK as
    var v_PGK: rate {pub: out};
    var Vmax_v11: rate {init: 2862};
    var KBPGA13_v11: mM {init: 0.003};
    var KADPg_v11: mM {init: 0.1};
    var r_v11: dimensionless {init: 0.47};
    var KPGA3_v11: mM {init: 1.62};
    var KATPg_v11: mM {init: 0.29};
    var atp_gly: mM {pub: in};
    var adp_gly: mM {pub: in};
    var bisphosphoglycerate_gly: mM {pub: in};
    var threephosphoglycerate_gly: mM {pub: in};
    v_PGK = Vmax_v11*(bisphosphoglycerate_gly/KBPGA13_v11*adp_gly/KADPg_v11-r_v11*threephosphoglycerate_gly/KPGA3_v11*atp_gly/KATPg_v11)/((1{dimensionless}+bisphosphoglycerate_gly/KBPGA13_v11+threephosphoglycerate_gly/KPGA3_v11)*(1{dimensionless}+adp_gly/KADPg_v11+atp_gly/KATPg_v11));
  enddef;

  def comp v_PK as
    var v_PK: rate {pub: out};
    var Vmax_v12: rate {init: 1020};
    var PK_n: dimensionless {init: 2.5};
    var KADP_v12: mM {init: 0.114};
    var adp_cyt: mM {pub: in};
    var atp_cyt: mM {pub: in};
    var phosphoenolpyruvate_cyt: mM {pub: in};
    v_PK = Vmax_v12*pow(phosphoenolpyruvate_cyt/(0.34{mM}*(1{dimensionless}+atp_cyt/0.57{mM}+adp_cyt/0.64{mM})), PK_n)*adp_cyt/KADP_v12/((1{dimensionless}+pow(phosphoenolpyruvate_cyt/(0.34{mM}*(1{dimensionless}+atp_cyt/0.57{mM}+adp_cyt/0.64{mM})), PK_n))*(1{dimensionless}+adp_cyt/KADP_v12));
  enddef;

  def comp v_AU as
    var v_AU: rate {pub: out};
    var k_vAU: rate {init: 50};
    var adp_cyt: mM {pub: in};
    var atp_cyt: mM {pub: in};
    v_AU = k_vAU*atp_cyt/adp_cyt;
  enddef;

  def comp v_GK as
    var v_GK: rate {pub: out};
    var Vmax_v14: rate {init: 200};
    var KGly3Pg_v14: mM {init: 3.83};
    var KADPg_v14: mM {init: 0.56};
    var r_v14: dimensionless {init: 60.86};
    var KGlycerol_v14: mM {init: 0.44};
    var KATPg_v14: mM {init: 0.24};
    var atp_gly: mM {pub: in};
    var adp_gly: mM {pub: in};
    var glycerol3phosphate_gly: mM {pub: in};
    var glycerol_gly: mM {pub: in};
    v_GK = Vmax_v14*(glycerol3phosphate_gly/KGly3Pg_v14*adp_gly/KADPg_v14-r_v14*glycerol_gly/KGlycerol_v14*atp_gly/KATPg_v14)/((1{dimensionless}+glycerol3phosphate_gly/KGly3Pg_v14+glycerol_gly/KGlycerol_v14)*(1{dimensionless}+adp_gly/KADPg_v14+atp_gly/KATPg_v14));
  enddef;

  def comp v_PGM as
    var v_PGM: rate {pub: out};
    var Kms_vPGM: mM {init: 0.27};
    var Kmp_vPGM: mM {init: 0.11};
    var Vf_vPGM: rate {init: 225};
    var Vr_vPGM: rate {init: 495};
    var twophosphoglycerate_cyt: mM {pub: in};
    var threephosphoglycerate_cyt: mM {pub: in};
    v_PGM = (Vf_vPGM*threephosphoglycerate_cyt/Kms_vPGM-Vr_vPGM*twophosphoglycerate_cyt/Kmp_vPGM)/(1{dimensionless}+threephosphoglycerate_cyt/Kms_vPGM+twophosphoglycerate_cyt/Kmp_vPGM);
  enddef;

  def comp v_ENO as
    var v_ENO: rate {pub: out};
    var Kms_vENO: mM {init: 0.054};
    var Kmp_vENO: mM {init: 0.24};
    var Vf_vENO: rate {init: 598};
    var Vr_vENO: rate {init: 394.68};
    var phosphoenolpyruvate_cyt: mM {pub: in};
    var twophosphoglycerate_cyt: mM {pub: in};
    v_ENO = (Vf_vENO*twophosphoglycerate_cyt/Kms_vENO-Vr_vENO*phosphoenolpyruvate_cyt/Kmp_vENO)/(1{dimensionless}+twophosphoglycerate_cyt/Kms_vENO+phosphoenolpyruvate_cyt/Kmp_vENO);
  enddef;

  def comp v_AKc as
    var v_AKc: rate {pub: out};
    var k_vAKc: nanomole_per_mM2_per_minute_per_mg {init: 1000000};
    var keqakc: dimensionless {init: 0.442};
    var adp_cyt: mM {pub: in};
    var atp_cyt: mM {pub: in};
    var amp_cyt: mM {pub: in};
    v_AKc = k_vAKc*(atp_cyt*amp_cyt-keqakc*adp_cyt*adp_cyt);
  enddef;

  def comp v_AKg as
    var v_AKg: rate {pub: out};
    var k_vAKg: nanomole_per_mM2_per_minute_per_mg {init: 1000000};
    var keqakg: dimensionless {init: 0.442};
    var atp_gly: mM {pub: in};
    var adp_gly: mM {pub: in};
    var amp_gly: mM {pub: in};
    v_AKg = k_vAKg*(atp_gly*amp_gly-keqakg*adp_gly*adp_gly);
  enddef;

  def comp v_PGT as
    var v_PGT: rate {pub: out};
    var k1_vPGT: ul_per_mg_per_minute {init: 1000000};
    var k2_vPGT: ul_per_mg_per_minute {init: 1000000};
    var threephosphoglycerate_cyt: mM {pub: in};
    var threephosphoglycerate_gly: mM {pub: in};
    v_PGT = k1_vPGT*threephosphoglycerate_gly-k2_vPGT*threephosphoglycerate_cyt;
  enddef;

  def comp v_ANTI as
    var v_ANTI: rate {pub: out};
    var k1: ul_per_mg_per_mM_per_minute {init: 1000000};
    var k2: ul_per_mg_per_mM_per_minute {init: 1000000};
    var dihydroxyacetonephosphate_cyt: mM {pub: in};
    var glycerol3phosphate_cyt: mM {pub: in};
    var dihydroxyacetonephosphate_gly: mM {pub: in};
    var glycerol3phosphate_gly: mM {pub: in};
    v_ANTI = k1*glycerol3phosphate_gly*dihydroxyacetonephosphate_cyt-k2*glycerol3phosphate_cyt*dihydroxyacetonephosphate_gly;
  enddef;

  def comp v_GlyT as
    var v_GlyT: rate {pub: out};
    var k1: ul_per_mg_per_minute {init: 1000000};
    var k2: ul_per_mg_per_minute {init: 1000000};
    var glycerol_gly: mM {pub: in};
    var glycerol_ext: mM {pub: in};
    v_GlyT = k1*glycerol_gly-k2*glycerol_ext;
  enddef;
  def map between environment and cytosolic_species for
    vars time and time;
    vars cytosolic_volume and cytosolic_volume;
  enddef;
  def map between environment and glycosomal_species for
    vars time and time;
    vars glycosomal_volume and glycosomal_volume;
  enddef;
  def map between environment and extracellular_species for
    vars time and time;
  enddef;
  def map between v_GT and extracellular_species for
    vars glucose_external and glucose_external;
  enddef;
  def map between v_GT and glycosomal_species for
    vars glucose_gly and glucose_gly;
    vars v_GT and v_GT;
  enddef;
  def map between v_HK and glycosomal_species for
    vars glucose_gly and glucose_gly;
    vars atp_gly and atp_gly;
    vars adp_gly and adp_gly;
    vars glucose6phosphate_gly and glucose6phosphate_gly;
    vars v_HK and v_HK;
  enddef;
  def map between v_PGI and glycosomal_species for
    vars glucose6phosphate_gly and glucose6phosphate_gly;
    vars fructose6phosphate_gly and fructose6phosphate_gly;
    vars v_PGI and v_PGI;
  enddef;
  def map between v_PFK and glycosomal_species for
    vars fructose16bisphosphate_gly and fructose16bisphosphate_gly;
    vars fructose6phosphate_gly and fructose6phosphate_gly;
    vars atp_gly and atp_gly;
    vars v_PFK and v_PFK;
  enddef;
  def map between v_ALD and glycosomal_species for
    vars fructose16bisphosphate_gly and fructose16bisphosphate_gly;
    vars glyceraldehyde3phosphate_gly and glyceraldehyde3phosphate_gly;
    vars dihydroxyacetonephosphate_gly and dihydroxyacetonephosphate_gly;
    vars atp_gly and atp_gly;
    vars adp_gly and adp_gly;
    vars amp_gly and amp_gly;
    vars v_ALD and v_ALD;
  enddef;
  def map between v_TPI and glycosomal_species for
    vars dihydroxyacetonephosphate_gly and dihydroxyacetonephosphate_gly;
    vars glyceraldehyde3phosphate_gly and glyceraldehyde3phosphate_gly;
    vars v_TPI and v_TPI;
  enddef;
  def map between v_GAPDH and glycosomal_species for
    vars glyceraldehyde3phosphate_gly and glyceraldehyde3phosphate_gly;
    vars nad_gly and nad_gly;
    vars bisphosphoglycerate_gly and bisphosphoglycerate_gly;
    vars nadh_gly and nadh_gly;
    vars v_GAPDH and v_GAPDH;
  enddef;
  def map between v_GPDH and glycosomal_species for
    vars dihydroxyacetonephosphate_gly and dihydroxyacetonephosphate_gly;
    vars nadh_gly and nadh_gly;
    vars nad_gly and nad_gly;
    vars glycerol3phosphate_gly and glycerol3phosphate_gly;
    vars v_GPDH and v_GPDH;
  enddef;
  def map between v_GPO and cytosolic_species for
    vars glycerol3phosphate_cyt and glycerol3phosphate_cyt;
    vars v_GPO and v_GPO;
  enddef;
  def map between v_PT and cytosolic_species for
    vars pyruvate_cyt and pyruvate_cyt;
    vars v_PT and v_PT;
  enddef;
  def map between v_PGK and glycosomal_species for
    vars bisphosphoglycerate_gly and bisphosphoglycerate_gly;
    vars adp_gly and adp_gly;
    vars threephosphoglycerate_gly and threephosphoglycerate_gly;
    vars atp_gly and atp_gly;
    vars v_PGK and v_PGK;
  enddef;
  def map between v_PK and cytosolic_species for
    vars phosphoenolpyruvate_cyt and phosphoenolpyruvate_cyt;
    vars atp_cyt and atp_cyt;
    vars adp_cyt and adp_cyt;
    vars v_PK and v_PK;
  enddef;
  def map between v_AU and cytosolic_species for
    vars atp_cyt and atp_cyt;
    vars adp_cyt and adp_cyt;
    vars v_AU and v_AU;
  enddef;
  def map between v_GK and glycosomal_species for
    vars glycerol3phosphate_gly and glycerol3phosphate_gly;
    vars adp_gly and adp_gly;
    vars glycerol_gly and glycerol_gly;
    vars atp_gly and atp_gly;
    vars v_GK and v_GK;
  enddef;
  def map between v_PGM and cytosolic_species for
    vars threephosphoglycerate_cyt and threephosphoglycerate_cyt;
    vars twophosphoglycerate_cyt and twophosphoglycerate_cyt;
    vars v_PGM and v_PGM;
  enddef;
  def map between v_ENO and cytosolic_species for
    vars twophosphoglycerate_cyt and twophosphoglycerate_cyt;
    vars phosphoenolpyruvate_cyt and phosphoenolpyruvate_cyt;
    vars v_ENO and v_ENO;
  enddef;
  def map between v_AKc and cytosolic_species for
    vars atp_cyt and atp_cyt;
    vars amp_cyt and amp_cyt;
    vars adp_cyt and adp_cyt;
    vars v_AKc and v_AKc;
  enddef;
  def map between v_AKg and glycosomal_species for
    vars atp_gly and atp_gly;
    vars amp_gly and amp_gly;
    vars adp_gly and adp_gly;
    vars v_AKg and v_AKg;
  enddef;
  def map between v_PGT and glycosomal_species for
    vars threephosphoglycerate_gly and threephosphoglycerate_gly;
    vars v_PGT and v_PGT;
  enddef;
  def map between v_PGT and cytosolic_species for
    vars threephosphoglycerate_cyt and threephosphoglycerate_cyt;
    vars v_PGT and v_PGT;
  enddef;
  def map between v_ANTI and glycosomal_species for
    vars glycerol3phosphate_gly and glycerol3phosphate_gly;
    vars dihydroxyacetonephosphate_gly and dihydroxyacetonephosphate_gly;
    vars v_ANTI and v_ANTI;
  enddef;
  def map between v_ANTI and cytosolic_species for
    vars dihydroxyacetonephosphate_cyt and dihydroxyacetonephosphate_cyt;
    vars glycerol3phosphate_cyt and glycerol3phosphate_cyt;
    vars v_ANTI and v_ANTI;
  enddef;
  def map between v_GlyT and glycosomal_species for
    vars glycerol_gly and glycerol_gly;
    vars v_GlyT and v_GlyT;
  enddef;
  def map between v_GlyT and extracellular_species for
    vars glycerol_ext and glycerol_ext;
  enddef;
enddef;
