// modelName cloutier_model_2009
// isDescribedBy 19396534
// modelName: cloutier_2009
// simulation: nonstandard-algorithm bdf15; nonstandard-releps 0.000001; nonstandard-abseps 0.000001; nonstandard-pointDensity 2000; endingValue 2500
def model cloutier_2009 as
  // An integrative dynamic model of brain energy metabolism using in vivo neurochemical measurements
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellMl model runs in OpenCell to recreate the published results. The units are balanced. Thank you to the original author Mathieu Cloutier for his invaluable help in the final stages of model curation. We recommend the followin simulation conditions: a duration of 2500 seconds with a an increase in neuronal activity at 200 seconds.
  //
  // Model Structure
  //
  // ABSTRACT: An integrative, systems approach to the modelling of brain energy metabolism is presented. Mechanisms such as glutamate cycling between neurons and astrocytes and glycogen storage in astrocytes have been implemented. A unique feature of the model is its calibration using in vivo data of brain glucose and lactate from freely moving rats under various stimuli. The model has been used to perform simulated perturbation experiments that show that glycogen breakdown in astrocytes is significantly activated during sensory (tail pinch) stimulation. This mechanism provides an additional input of energy substrate during high consumption phases. By way of validation, data from the perfusion of 50 microM propranolol in the rat brain was compared with the model outputs. Propranolol affects the glucose dynamics during stimulation, and this was accurately reproduced in the model by a reduction in the glycogen breakdown in astrocytes. The model's predictive capacity was verified by using data from a sensory stimulation (restraint) that was not used for model calibration. Finally, a sensitivity analysis was conducted on the model parameters, this showed that the control of energy metabolism and transport processes are critical in the metabolic behaviour of cerebral tissue.
  //
  // model diagram
  //
  // Schematic diagram of the model for astrocyte-neuron metabolism
  //
  // The original paper reference is cited below:
  //
  // An integrative dynamic model of brain energy metabolism using in vivo neurochemical measurements, Mathieu Cloutier, Fiachra B. Bolger, John P. Lowry and Peter Wellstead, 2009, Journal of Computational Neuroscience , 27, 391-414. PubMed ID: 19396534 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=19396534&query_hl=1&itool=pubmed_docsum)
  def unit mV_C_per_mol as
    unit C_per_mole;
    unit mV;
  enddef;
  def unit C_per_mole as
    unit mole {expo: -1.0};
    unit coulomb;
  enddef;
  def unit per_mM_per_s as
    unit mM {expo: -1.0};
    unit second {expo: -1.0};
  enddef;
  def unit per_mM as
    unit mM {expo: -1.0};
  enddef;
  def unit per_s as
    unit second {expo: -1.0};
  enddef;
  def unit s as
    unit second;
  enddef;
  def unit cm_per_mM_per_s as
    unit second {expo: -1.0};
    unit mM {expo: -1.0};
    unit metre {pref: centi};
  enddef;
  def unit per_cm as
    unit metre {expo: -1.0, pref: centi};
  enddef;
  def unit mS_per_cm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2.0, pref: centi};
  enddef;
  def unit L_per_millimole as
    unit litre;
    unit mole {expo: -1.0, pref: milli};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1.0};
  enddef;
  def unit mM as
    unit litre {expo: -1.0};
    unit mole {pref: milli};
  enddef;

  def comp environment as
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: out};
  enddef;

  def comp NAn as
    // isComputationalComponentFor: #property_0; physicalPropertyOf #entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of sodium in the neuron.
    var NAn: mM {init: 15.533, pub: out};
    // isComputationalComponentFor: #property_1; #process_0; description ; #mediator_0; hasPhysicalEntityReference #entity_4; #sink_0; hasMultiplier 1.0; hasPhysicalEntityReference #entity_2; #source_0; hasMultiplier 1.0; hasPhysicalEntityReference #entity_0; name Na(1+) leakage from the neuron to the extracellular space.; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Sodium leak from the neuron to the extracellular space.
    var Vn_leak_Na: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_2; physicalPropertyOf #process_1; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Sodium pump from neuron to the extracellular space.
    var Vn_pump: mM_per_s {pub: in};
    var Vn_stim: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(NAn, time) = Vn_leak_Na+Vn_stim-3{dimensionless}*Vn_pump;
  enddef;

  def comp GLCn as
    // isComputationalComponentFor: #property_3; physicalPropertyOf #entity_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the neuron.
    var GLCn: mM {init: 0.2633, pub: out};
    // isComputationalComponentFor: #property_4; physicalPropertyOf #process_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Exchange of glucose between the extracellular space and neurons.
    var V_en_GLC: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Hexokinase
    var Vn_hk: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(GLCn, time) = V_en_GLC-Vn_hk;
  enddef;

  def comp G6Pn as
    // isComputationalComponentFor: #property_6; physicalPropertyOf #entity_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose-6-phosphate in the neuron.
    var G6Pn: mM {init: 0.7275, pub: out};
    // isComputationalComponentFor: #property_7; #process_3; description ; name Phosphoglucose isomerase metabolism in the neuron; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphoglucose isomerase metabolism in the neuron
    var Vn_pgi: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Hexokinase
    var Vn_hk: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(G6Pn, time) = Vn_hk-Vn_pgi;
  enddef;

  def comp F6Pn as
    // isComputationalComponentFor: #property_9; physicalPropertyOf #entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of fructose-6-phosphate in the neuron.
    var F6Pn: mM {init: 0.1091, pub: out};
    // isComputationalComponentFor: #property_10; physicalPropertyOf #process_3; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphoglucose isomerase metabolism in the neuron
    var Vn_pgi: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_11; physicalPropertyOf #process_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphofructokinase metabolism in the neuron
    var Vn_pfk: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(F6Pn, time) = Vn_pgi-Vn_pfk;
  enddef;

  def comp GAPn as
    // isComputationalComponentFor: #property_12; #entity_9; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17138; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glyceraldehyde 3-phosphate in the neuron.
    var GAPn: mM {init: 0.0418, pub: out};
    // isComputationalComponentFor: #property_13; physicalPropertyOf #process_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphoglycerate kinase metabolism in the neuron
    var Vn_pgk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_14; physicalPropertyOf #process_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphofructokinase metabolism in the neuron
    var Vn_pfk: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(GAPn, time) = 2{dimensionless}*Vn_pfk-Vn_pgk;
  enddef;

  def comp PEPn as
    // isComputationalComponentFor: #property_15; #entity_10; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:18021; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in concentration of phosphoenolpyruvate in the neuron.
    var PEPn: mM {init: 0.0037, pub: out};
    // isComputationalComponentFor: #property_16; physicalPropertyOf #process_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphoglycerate kinase metabolism in the neuron
    var Vn_pgk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_17; #process_6; description ; name Pyruvate kinase metabolism in the Neuron; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Pyruvate kinase metabolism in the Neuron
    var Vn_pk: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(PEPn, time) = Vn_pgk-Vn_pk;
  enddef;

  def comp PYRn as
    // isComputationalComponentFor: #property_18; #entity_11; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:15361; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of pyruvate in the neuron.
    var PYRn: mM {init: 0.0388, pub: out};
    // isComputationalComponentFor: #property_19; physicalPropertyOf #process_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Pyruvate kinase metabolism in the Neuron
    var Vn_pk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_20; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Lactate dehydrogenase
    var Vn_ldh: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_21; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Mitochondrial oxidation of pyruvate
    var Vn_mito: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(PYRn, time) = Vn_pk-(Vn_ldh+Vn_mito);
  enddef;

  def comp LACn as
    // isComputationalComponentFor: #property_22; physicalPropertyOf #entity_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Lactate in the neuron.
    var LACn: mM {init: 0.3856, pub: out};
    // isComputationalComponentFor: #property_23; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Lactate dehydrogenase
    var Vn_ldh: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_24; #process_7; description ; #sink_3; hasMultiplier 1.0; #entity_13; part_of #entity_3; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:24996; #source_3; hasMultiplier 1.0; #entity_12; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:24996; name Lactate exchange between neuron and extracellular space; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Lactate exchange between neuron and extracellular space.
    var Vne_LAC: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(LACn, time) = Vn_ldh-Vne_LAC;
  enddef;

  def comp NADHn as
    // isComputationalComponentFor: #property_25; physicalPropertyOf #entity_14; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Nicotinamide adenine dinucleotide (reduced) in neuron
    var NADHn: mM {init: 0.0319, pub: out};
    // isComputationalComponentFor: #property_26; physicalPropertyOf #process_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphoglycerate kinase metabolism in the neuron
    var Vn_pgk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_27; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Lactate dehydrogenase
    var Vn_ldh: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_28; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Mitochondrial oxidation of pyruvate
    var Vn_mito: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(NADHn, time) = Vn_pgk-(Vn_ldh+Vn_mito);
  enddef;

  def comp ATPn as
    // isComputationalComponentFor: #property_29; physicalPropertyOf #entity_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the neuron of the brain.
    var ATPn: mM {init: 2.2592, pub: out};
    var nOP: dimensionless {pub: in};
    // isComputationalComponentFor: #property_30; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Hexokinase
    var Vn_hk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_31; physicalPropertyOf #process_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphofructokinase metabolism in the neuron
    var Vn_pfk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_32; physicalPropertyOf #process_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphoglycerate kinase metabolism in the neuron
    var Vn_pgk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_33; physicalPropertyOf #process_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Pyruvate kinase metabolism in the Neuron
    var Vn_pk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_34; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of ATPase (excluding Na-ATPase)
    var Vn_ATPase: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_35; physicalPropertyOf #process_1; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Sodium pump from neuron to the extracellular space.
    var Vn_pump: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_36; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Mitochondrial oxidation of pyruvate
    var Vn_mito: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_37; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Creatine kinase
    var Vn_ck: mM_per_s {pub: in};
    var dAMP_dATPn: dimensionless {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(ATPn, time) = (Vn_pgk+Vn_pk+nOP*Vn_mito+Vn_ck-(Vn_hk+Vn_pfk+Vn_ATPase+Vn_pump))*pow(1{dimensionless}-dAMP_dATPn, -1{dimensionless});
  enddef;

  def comp PCrn as
    // isComputationalComponentFor: #property_38; physicalPropertyOf #entity_16; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in change in concentration of phosphocreatine in the neuron.
    var PCrn: mM {init: 4.2529, pub: out};
    // isComputationalComponentFor: #property_39; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Creatine kinase
    var Vn_ck: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(PCrn, time) = -Vn_ck;
  enddef;

  def comp O2n as
    // isComputationalComponentFor: #property_40; physicalPropertyOf #entity_17; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Oxygen in the neuron.
    var O2n: mM {init: 0.0975, pub: out};
    var NAero: dimensionless {pub: in};
    // isComputationalComponentFor: #property_41; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Mitochondrial oxidation of pyruvate
    var Vn_mito: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_42; physicalPropertyOf #process_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Oxygen exchange between the capillary and the neurons.
    var Vcn_O2: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(O2n, time) = Vcn_O2-NAero*Vn_mito;
  enddef;

  def comp GLUn as
    // isComputationalComponentFor: #property_43; physicalPropertyOf #entity_20; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in concentration of glutamate in the neuron
    var GLUn: mM {init: 3.0, pub: out};
    var Rng: dimensionless {pub: in};
    var Vg_gs: mM_per_s {pub: in};
    var Vn_stim_GLU: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(GLUn, time) = Vg_gs*(1{dimensionless}/Rng)-Vn_stim_GLU;
  enddef;

  def comp NAg as
    // isComputationalComponentFor: #property_44; physicalPropertyOf #entity_21; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: rate of change in the concentration of sodium in the astrocyte.
    var NAg: mM {init: 13.36, pub: out};
    // isComputationalComponentFor: #property_45; #process_9; description ; #mediator_2; hasPhysicalEntityReference #entity_4; #sink_5; hasMultiplier 1.0; hasPhysicalEntityReference #entity_21; #source_5; hasMultiplier 1.0; hasPhysicalEntityReference #entity_2; name Na(1+) leak from the extracellular space to the astrocyte.; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Sodium leak from the extracellular space to the astrocyte.
    var Vg_leak_Na: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_46; #process_10; description ; #mediator_3; hasPhysicalEntityReference #entity_4; #sink_6; hasMultiplier 1.0; hasPhysicalEntityReference #entity_2; #source_6; hasMultiplier 1.0; #entity_21; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29101; name Sodium exchange from the astrocyte to the extracellular space.; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Sodium exchange from astrocyte to the extracellular space.
    var Vg_pump: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_47; #process_11; description ; #sink_7; hasMultiplier 1.0; hasPhysicalEntityReference #entity_24; #source_7; hasMultiplier 1.0; #entity_23; name Glutamate; description ; part_of #entity_3; name Glutamate exchange between the extracellular space and the astrocyte; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Glutamate exchange between the extracellular space and the astrocyte.
    var Veg_GLU: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(NAg, time) = Vg_leak_Na+3{dimensionless}*Veg_GLU-3{dimensionless}*Vg_pump;
  enddef;

  def comp GLCg as
    // isComputationalComponentFor: #property_48; physicalPropertyOf #entity_25; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the astrocyte.
    var GLCg: mM {init: 0.1656, pub: out};
    // isComputationalComponentFor: #property_49; physicalPropertyOf #process_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Glucose exchange between capillary and astrocytes.
    var Vcg_GLC: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_50; physicalPropertyOf #process_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Glucose exchange between the extracellular space and astrocytes.
    var Veg_GLC: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_51; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Hexokinase
    var Vg_hk: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(GLCg, time) = Vcg_GLC+Veg_GLC-Vg_hk;
  enddef;

  def comp G6Pg as
    // isComputationalComponentFor: #property_52; #entity_27; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:14314; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose-6-phosphate in the astrocyte
    var G6Pg: mM {init: 0.7326, pub: out};
    // isComputationalComponentFor: #property_53; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Phosphoglucose isomerase
    var Vg_pgi: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_54; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: glycogen synthase flow rate
    var Vg_glys: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_55; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Glycogen phosphorylase flow rate in the astrocyte
    var Vg_glyp: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_56; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Hexokinase
    var Vg_hk: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(G6Pg, time) = Vg_hk+Vg_glyp-(Vg_pgi+Vg_glys);
  enddef;

  def comp F6Pg as
    // isComputationalComponentFor: #property_57; physicalPropertyOf #entity_28; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of fructose-6-phosphate in the astrocyte
    var F6Pg: mM {init: 0.1116, pub: out};
    // isComputationalComponentFor: #property_58; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Phosphoglucose isomerase
    var Vg_pgi: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_59; physicalPropertyOf #process_14; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphofructokinase metabolism in the astrocyte
    var Vg_pfk: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(F6Pg, time) = Vg_pgi-Vg_pfk;
  enddef;

  def comp GAPg as
    // isComputationalComponentFor: #property_60; physicalPropertyOf #entity_29; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glyceraldehyde-3-phosphate in the astrocyte.
    var GAPg: mM {init: 0.0698, pub: out};
    // isComputationalComponentFor: #property_61; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Phosphoglycerate kinase
    var Vg_pgk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_62; #process_14; description ; name Phosphofructokinase metabolism in the astrocyte; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphofructokinase metabolism in the astrocyte
    var Vg_pfk: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(GAPg, time) = 2{dimensionless}*Vg_pfk-Vg_pgk;
  enddef;

  def comp PEPg as
    // isComputationalComponentFor: #property_63; physicalPropertyOf #entity_30; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in concentration of Phosphoenolpyruvate in the astrocyte.
    var PEPg: mM {init: 0.0254, pub: out};
    // isComputationalComponentFor: #property_64; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Phosphoglycerate kinase
    var Vg_pgk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_65; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Pyruvate kinase
    var Vg_pk: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(PEPg, time) = Vg_pgk-Vg_pk;
  enddef;

  def comp PYRg as
    // isComputationalComponentFor: #property_66; physicalPropertyOf #entity_31; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in pyruvate in the astrocyte.
    var PYRg: mM {init: 0.1711, pub: out};
    // isComputationalComponentFor: #property_67; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Lactate dehydrogenase
    var Vg_ldh: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_68; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Pyruvate kinase
    var Vg_pk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_69; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Mitochondrial oxidation of pyruvate
    var Vg_mito: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(PYRg, time) = Vg_pk-(Vg_ldh+Vg_mito);
  enddef;

  def comp LACg as
    // isComputationalComponentFor: #property_70; physicalPropertyOf #entity_32; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: rate of change in the concentration of Lactate in the astrocyte
    var LACg: mM {init: 0.4651, pub: out};
    // isComputationalComponentFor: #property_71; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Lactate dehydrogenase
    var Vg_ldh: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_72; physicalPropertyOf #process_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Lactate exchange between the astrocyte and the extracellular space.
    var Vge_LAC: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_73; physicalPropertyOf #process_16; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Lactate exchange between the astrocyte and the capillary.
    var Vgc_LAC: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(LACg, time) = Vg_ldh-(Vge_LAC+Vgc_LAC);
  enddef;

  def comp NADHg as
    // isComputationalComponentFor: #property_74; physicalPropertyOf #entity_34; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the conc of Nicotinamide adenine dinucleotide reduced in astrocyte.
    var NADHg: mM {init: 0.0445, pub: out};
    // isComputationalComponentFor: #property_75; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Phosphoglycerate kinase
    var Vg_pgk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_76; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Lactate dehydrogenase
    var Vg_ldh: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_77; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Mitochondrial oxidation of pyruvate
    var Vg_mito: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(NADHg, time) = Vg_pgk-(Vg_ldh+Vg_mito);
  enddef;

  def comp ATPg as
    // isComputationalComponentFor: #property_78; #entity_35; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:15422; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the astrocyte.
    var ATPg: mM {init: 2.24, pub: out};
    var nOP: dimensionless {pub: in};
    // isComputationalComponentFor: #property_79; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Hexokinase
    var Vg_hk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_80; physicalPropertyOf #process_14; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphofructokinase metabolism in the astrocyte
    var Vg_pfk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_81; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Phosphoglycerate kinase
    var Vg_pgk: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_82; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Pyruvate kinase
    var Vg_pk: mM_per_s {pub: in};
    // description: Metabolism of ATPase (excluding Na-ATPase) in the astrocyte.
    var Vg_ATPase: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_83; physicalPropertyOf #process_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Sodium exchange from astrocyte to the extracellular space.
    var Vg_pump: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_84; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Mitochondrial oxidation of pyruvate
    var Vg_mito: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_85; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Metabolism of creatine kinase in the astrocyte
    var Vg_ck: mM_per_s {pub: in};
    var Vg_gs: mM_per_s {pub: in};
    var dAMP_dATPg: dimensionless {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(ATPg, time) = (Vg_pgk+Vg_pk+nOP*Vg_mito+Vg_ck-(Vg_hk+Vg_pfk+Vg_ATPase+Vg_pump+Vg_gs))*pow(1{dimensionless}-dAMP_dATPg, -1{dimensionless});
  enddef;

  def comp PCrg as
    // isComputationalComponentFor: #property_86; physicalPropertyOf #entity_36; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of phosphocreatine in the astrocyte.
    var PCrg: mM {init: 4.6817, pub: out};
    // isComputationalComponentFor: #property_87; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Metabolism of creatine kinase in the astrocyte
    var Vg_ck: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(PCrg, time) = -Vg_ck;
  enddef;

  def comp O2g as
    // isComputationalComponentFor: #property_88; physicalPropertyOf #entity_37; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Oxygen in the astrocyte.
    var O2g: mM {init: 0.1589, pub: out};
    var NAero: dimensionless {pub: in};
    // isComputationalComponentFor: #property_89; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Mitochondrial oxidation of pyruvate
    var Vg_mito: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_90; physicalPropertyOf #process_17; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Oxygen exchange between capillary and astrocytes
    var Vcg_O2: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(O2g, time) = Vcg_O2-NAero*Vg_mito;
  enddef;

  def comp GLYg as
    // isComputationalComponentFor: #property_91; physicalPropertyOf #entity_38; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change of glycogen in the astrocyte.
    var GLYg: mM {init: 2.5, pub: out};
    // isComputationalComponentFor: #property_92; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: glycogen synthase flow rate
    var Vg_glys: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_93; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Glycogen phosphorylase flow rate in the astrocyte
    var Vg_glyp: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(GLYg, time) = Vg_glys-Vg_glyp;
  enddef;

  def comp GLUg as
    // isComputationalComponentFor: #property_94; physicalPropertyOf #entity_24; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the intracellular concentration of glutamate in the astrocyte.
    var GLUg: mM {init: 0.0, pub: out};
    // isComputationalComponentFor: #property_95; physicalPropertyOf #process_11; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Glutamate exchange between the extracellular space and the astrocyte.
    var Veg_GLU: mM_per_s {pub: in};
    var Vg_gs: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(GLUg, time) = Veg_GLU-Vg_gs;
  enddef;

  def comp GLCe as
    // isComputationalComponentFor: #property_96; physicalPropertyOf #entity_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the extracellular space.
    var GLCe: mM {init: 0.3339, pub: out};
    var Reg: dimensionless {pub: in};
    var Ren: dimensionless {pub: in};
    // isComputationalComponentFor: #property_97; physicalPropertyOf #process_18; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Glucose exchange between capillary and extracellular space.
    var Vce_GLC: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_98; physicalPropertyOf #process_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Glucose exchange between the extracellular space and astrocytes.
    var Veg_GLC: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_99; #process_2; description ; #sink_2; hasMultiplier 1.0; hasPhysicalEntityReference #entity_5; #source_2; hasMultiplier 1.0; hasPhysicalEntityReference #entity_6; name Glucose exchange between extracellular fluid and neurons.; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Exchange of glucose between the extracellular space and neurons.
    var V_en_GLC: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(GLCe, time) = Vce_GLC-(Veg_GLC*(1{dimensionless}/Reg)+V_en_GLC*(1{dimensionless}/Ren));
  enddef;

  def comp LACe as
    // isComputationalComponentFor: #property_100; physicalPropertyOf #entity_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Lactate in the extracellular space.
    var LACe: mM {init: 0.3986, pub: out};
    var Reg: dimensionless {pub: in};
    var Ren: dimensionless {pub: in};
    // isComputationalComponentFor: #property_101; physicalPropertyOf #process_19; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Lactate exchange between extracellular space and capillaries.
    var Vec_LAC: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_102; physicalPropertyOf #process_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Lactate exchange between neuron and extracellular space.
    var Vne_LAC: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_103; physicalPropertyOf #process_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Lactate exchange between the astrocyte and the extracellular space.
    var Vge_LAC: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(LACe, time) = Vne_LAC*(1{dimensionless}/Ren)+Vge_LAC*(1{dimensionless}/Reg)-Vec_LAC;
  enddef;

  def comp GLUe as
    // isComputationalComponentFor: #property_104; physicalPropertyOf #entity_23; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glutamate in the extracellular space.
    var GLUe: mM {init: 0.0, pub: out};
    var Reg: dimensionless {pub: in};
    var Ren: dimensionless {pub: in};
    var Vn_stim_GLU: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_105; physicalPropertyOf #process_11; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Glutamate exchange between the extracellular space and the astrocyte.
    var Veg_GLU: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(GLUe, time) = Vn_stim_GLU*(1{dimensionless}/Ren)-Veg_GLU*(1{dimensionless}/Reg);
  enddef;

  def comp O2c as
    // isComputationalComponentFor: #property_106; physicalPropertyOf #entity_18; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of oxygen in the capillary.
    var O2c: mM {init: 7.4201, pub: out};
    var Rcn: dimensionless {pub: in};
    var Rcg: dimensionless {pub: in};
    // description: Blood flow contribution to capillary O2
    var Vc_O2: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_107; #process_8; description ; #sink_4; hasMultiplier 1.0; #entity_17; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:33263; #source_4; hasMultiplier 1.0; #entity_18; #entity_19; hasPhysicalDefinition http://identifiers.org/fma/FMA:280996; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:33263; name Oxygen exchange between the capillary and the neurons.; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Oxygen exchange between the capillary and the neurons.
    var Vcn_O2: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_108; #process_17; description ; #sink_12; hasMultiplier 1.0; #entity_37; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:33263; #source_12; hasMultiplier 1.0; hasPhysicalEntityReference #entity_18; name Oxygen exchange between capillary and astrocytes; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Oxygen exchange between capillary and astrocytes
    var Vcg_O2: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(O2c, time) = Vc_O2-(Vcn_O2*(1{dimensionless}/Rcn)+Vcg_O2*(1{dimensionless}/Rcg));
  enddef;

  def comp GLCc as
    // isComputationalComponentFor: #property_109; physicalPropertyOf #entity_26; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the capillary.
    var GLCc: mM {init: 4.6401, pub: out};
    var Rce: dimensionless {pub: in};
    var Rcg: dimensionless {pub: in};
    var Vc_GLC: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_110; #process_18; description ; #sink_13; hasMultiplier 1.0; hasPhysicalEntityReference #entity_6; #source_13; hasMultiplier 1.0; #entity_26; description ; part_of #entity_19; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17234; name Exchange of glucose from capillary to extracellular space.; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Glucose exchange between capillary and extracellular space.
    var Vce_GLC: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_111; #process_12; description ; #sink_8; hasMultiplier 1.0; hasPhysicalEntityReference #entity_25; #source_8; hasMultiplier 1.0; hasPhysicalEntityReference #entity_26; name Glucose exchange between capillary and astrocytes.; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Glucose exchange between capillary and astrocytes.
    var Vcg_GLC: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(GLCc, time) = Vc_GLC-(Vce_GLC*(1{dimensionless}/Rce)+Vcg_GLC*(1{dimensionless}/Rcg));
  enddef;

  def comp LACc as
    // isComputationalComponentFor: #property_112; physicalPropertyOf #entity_33; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Lactate in the capillary.
    var LACc: mM {init: 0.3251, pub: out};
    var Rce: dimensionless {pub: in};
    var Rcg: dimensionless {pub: in};
    // isComputationalComponentFor: #property_113; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Lactate entering the capillary
    var Vc_LAC: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_114; physicalPropertyOf #process_19; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Lactate exchange between extracellular space and capillaries.
    var Vec_LAC: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_115; physicalPropertyOf #process_16; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Lactate exchange between the astrocyte and the capillary.
    var Vgc_LAC: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(LACc, time) = Vc_LAC+Vec_LAC*(1{dimensionless}/Rce)+Vgc_LAC*(1{dimensionless}/Rcg);
  enddef;

  def comp CO2c as
    // isComputationalComponentFor: #property_116; physicalPropertyOf #entity_39; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Carbon Dioxide in a capillary in the brain.
    var CO2c: mM {init: 2.12, pub: out};
    var Rcn: dimensionless {pub: in};
    var Rcg: dimensionless {pub: in};
    // isComputationalComponentFor: #property_117; physicalPropertyOf #process_20; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Carbon Dioxide exchange between neuron and capillary
    var Vnc_CO2: mM_per_s {pub: in};
    var Vc_CO2: mM_per_s {pub: in};
    // isComputationalComponentFor: #property_118; #process_21; description ; #sink_16; hasMultiplier 1.0; #entity_39; part_of #entity_19; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:16526; #source_16; hasMultiplier 1.0; #entity_41; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:16526; name CO2 exchange between the astrocyte and capillary.; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Carbon Dioxide exchange between astrocyte and capillary.
    var Vgc_CO2: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(CO2c, time) = Vnc_CO2*(1{dimensionless}/Rcn)+Vgc_CO2*(1{dimensionless}/Rcg)-Vc_CO2;
  enddef;

  def comp Vv as
    var Vv: dimensionless {init: 0.0237, pub: out};
    // description: Blood flow entering the capillary.
    var Fin_t: per_s {pub: in};
    // description: Blood flow out of the capillary.
    var Fout_t: per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(Vv, time) = Fin_t-Fout_t;
  enddef;

  def comp dHb as
    // isComputationalComponentFor: #property_119; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    var dHb: mM {init: 0.0218, pub: out};
    // description: Blood flow entering the capillary.
    var Fin_t: per_s {pub: in};
    // description: Blood flow out of the capillary.
    var Fout_t: per_s {pub: in};
    var Vv: dimensionless {pub: in};
    var O2a: mM {pub: in};
    // isComputationalComponentFor: #property_120; physicalPropertyOf #entity_18; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of oxygen in the capillary.
    var O2c: mM {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    ode(dHb, time) = Fin_t*(O2a-O2c)-Fout_t*(dHb/Vv);
  enddef;

  def comp Vn_leak_Na as
    // isComputationalComponentFor: #property_121; physicalPropertyOf #process_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Sodium leak from the neuron to the extracellular space.
    var Vn_leak_Na: mM_per_s {pub: out};
    var gn_NA: mS_per_cm2 {init: 0.0039};
    var Sm_n: per_cm {pub: in};
    var Vm: mV {pub: in};
    var Vn: dimensionless {pub: in};
    var RT: mV_C_per_mol {pub: in};
    var F: C_per_mole {pub: in};
    var NAe: mM {pub: in};
    // isComputationalComponentFor: #property_122; physicalPropertyOf #entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of sodium in the neuron.
    var NAn: mM {pub: in};
    Vn_leak_Na = Sm_n/Vn*(gn_NA/F)*(RT/F*ln(NAe/NAn)-Vm);
  enddef;

  def comp Vn_pump as
    // isComputationalComponentFor: #property_123; #process_1; description ; #mediator_1; #entity_4; hasPhysicalDefinition http://identifiers.org/go/GO:0005272; #sink_1; hasMultiplier 1.0; #entity_2; #entity_3; hasPhysicalDefinition http://identifiers.org/fma/FMA:70022; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29101; #source_1; hasMultiplier 1.0; #entity_0; #entity_1; hasPhysicalDefinition http://identifiers.org/fma/FMA:54527; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29101; name Na(1+) exchange from neuron to the extracellular space; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Sodium pump from neuron to the extracellular space.
    var Vn_pump: mM_per_s {pub: out};
    var kpump: cm_per_mM_per_s {pub: in};
    var Km_pump: mM {pub: in};
    var Sm_n: per_cm {pub: in};
    var Vn: dimensionless {pub: in};
    // isComputationalComponentFor: #property_124; physicalPropertyOf #entity_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the neuron of the brain.
    var ATPn: mM {pub: in};
    // isComputationalComponentFor: #property_125; physicalPropertyOf #entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of sodium in the neuron.
    var NAn: mM {pub: in};
    Vn_pump = Sm_n/Vn*kpump*ATPn*NAn*pow(1{dimensionless}+ATPn/Km_pump, -1{dimensionless});
  enddef;

  def comp Vn_stim as
    var Vn_stim: mM_per_s {pub: out};
    // isComputationalComponentFor: #property_126; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Neuronal Na inflow due to stimulation
    var v_stim: mM_per_s {pub: in};
    Vn_stim = v_stim;
  enddef;

  def comp V_en_GLC as
    // isComputationalComponentFor: #property_127; physicalPropertyOf #process_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Exchange of glucose between the extracellular space and neurons.
    var V_en_GLC: mM_per_s {pub: out};
    var Km_en_GLC: mM {init: 5.32};
    var Vm_en_GLC: mM_per_s {init: 0.50417};
    // isComputationalComponentFor: #property_128; physicalPropertyOf #entity_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the extracellular space.
    var GLCe: mM {pub: in};
    // isComputationalComponentFor: #property_129; #entity_5; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17234; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the neuron.
    var GLCn: mM {pub: in};
    V_en_GLC = Vm_en_GLC*(GLCe/(GLCe+Km_en_GLC)-GLCn/(GLCn+Km_en_GLC));
  enddef;

  def comp Vn_hk as
    // isComputationalComponentFor: #property_130; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Hexokinase
    var Vn_hk: mM_per_s {pub: out};
    var Vmax_n_hk: mM_per_s {init: 0.0513};
    var Km_GLC: mM {pub: in};
    // isComputationalComponentFor: #property_131; physicalPropertyOf #entity_5; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the neuron.
    var GLCn: mM {pub: in};
    // isComputationalComponentFor: #property_132; #entity_15; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:15422; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the neuron of the brain.
    var ATPn: mM {pub: in};
    // isComputationalComponentFor: #property_133; physicalPropertyOf #entity_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose-6-phosphate in the neuron.
    var G6Pn: mM {pub: in};
    var G6P_inh_hk: mM {pub: in};
    var aG6P_inh_hk: dimensionless {pub: in};
    Vn_hk = Vmax_n_hk*ATPn*(GLCn/(GLCn+Km_GLC))*(1{per_mM}-1{per_mM}/(1{dimensionless}+exp(-aG6P_inh_hk*(1{per_mM}*(G6Pn-G6P_inh_hk)))));
  enddef;

  def comp Vn_pgi as
    // isComputationalComponentFor: #property_134; physicalPropertyOf #process_3; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphoglucose isomerase metabolism in the neuron
    var Vn_pgi: mM_per_s {pub: out};
    var Vmaxf_n_pgi: mM_per_s {init: 0.5};
    var Vmaxr_n_pgi: mM_per_s {init: 0.45};
    var Km_G6P: mM {pub: in};
    var Km_F6P_pgi: mM {pub: in};
    // isComputationalComponentFor: #property_135; physicalPropertyOf #entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of fructose-6-phosphate in the neuron.
    var F6Pn: mM {pub: in};
    // isComputationalComponentFor: #property_136; #entity_7; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:14314; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose-6-phosphate in the neuron.
    var G6Pn: mM {pub: in};
    Vn_pgi = Vmaxf_n_pgi*(G6Pn/(G6Pn+Km_G6P))-Vmaxr_n_pgi*(F6Pn/(F6Pn+Km_F6P_pgi));
  enddef;

  def comp Vn_pfk as
    // isComputationalComponentFor: #property_137; #process_4; description ; name Phosphofructokinase metabolism in the neuron; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphofructokinase metabolism in the neuron
    var Vn_pfk: mM_per_s {pub: out};
    var kn_pfk: per_s {init: 0.55783};
    var Km_F6P_pfk: mM {pub: in};
    var Ki_ATP: mM {pub: in};
    var nH: dimensionless {pub: in};
    // isComputationalComponentFor: #property_138; physicalPropertyOf #entity_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the neuron of the brain.
    var ATPn: mM {pub: in};
    // isComputationalComponentFor: #property_139; #entity_8; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:88003; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of fructose-6-phosphate in the neuron.
    var F6Pn: mM {pub: in};
    Vn_pfk = kn_pfk*ATPn*(F6Pn/(F6Pn+Km_F6P_pfk))*pow(1{dimensionless}+pow(ATPn/Ki_ATP, nH), -1{dimensionless});
  enddef;

  def comp Vn_pgk as
    // isComputationalComponentFor: #property_140; #process_5; description ; name Phosphoglycerate kinase metabolism in the neuron; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphoglycerate kinase metabolism in the neuron
    var Vn_pgk: mM_per_s {pub: out};
    var kn_pgk: per_mM_per_s {init: 0.4287};
    // isComputationalComponentFor: #property_141; physicalPropertyOf #entity_42; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Concentration of ADP in neuron during adenylate kinase equilibrium
    var ADPn: mM {pub: in};
    // isComputationalComponentFor: #property_142; physicalPropertyOf #entity_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glyceraldehyde 3-phosphate in the neuron.
    var GAPn: mM {pub: in};
    var NADn: mM {pub: in};
    // isComputationalComponentFor: #property_143; physicalPropertyOf #entity_14; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Nicotinamide adenine dinucleotide (reduced) in neuron
    var NADHn: mM {pub: in};
    Vn_pgk = kn_pgk*GAPn*ADPn*(NADn/NADHn);
  enddef;

  def comp Vn_pk as
    // isComputationalComponentFor: #property_144; physicalPropertyOf #process_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Pyruvate kinase metabolism in the Neuron
    var Vn_pk: mM_per_s {pub: out};
    var kn_pk: per_mM_per_s {init: 28.6};
    // isComputationalComponentFor: #property_145; physicalPropertyOf #entity_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in concentration of phosphoenolpyruvate in the neuron.
    var PEPn: mM {pub: in};
    // isComputationalComponentFor: #property_146; physicalPropertyOf #entity_42; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Concentration of ADP in neuron during adenylate kinase equilibrium
    var ADPn: mM {pub: in};
    Vn_pk = kn_pk*PEPn*ADPn;
  enddef;

  def comp Vn_ldh as
    // isComputationalComponentFor: #property_147; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Lactate dehydrogenase
    var Vn_ldh: mM_per_s {pub: out};
    var kfn_ldh: per_mM_per_s {init: 5.30};
    var krn_ldh: per_mM_per_s {init: 0.1046};
    // isComputationalComponentFor: #property_148; physicalPropertyOf #entity_11; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of pyruvate in the neuron.
    var PYRn: mM {pub: in};
    // isComputationalComponentFor: #property_149; #entity_14; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:16908; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Nicotinamide adenine dinucleotide (reduced) in neuron
    var NADHn: mM {pub: in};
    // isComputationalComponentFor: #property_150; physicalPropertyOf #entity_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Lactate in the neuron.
    var LACn: mM {pub: in};
    var NADn: mM {pub: in};
    Vn_ldh = kfn_ldh*PYRn*NADHn-krn_ldh*LACn*NADn;
  enddef;

  def comp Vn_mito as
    // isComputationalComponentFor: #property_151; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Mitochondrial oxidation of pyruvate
    var Vn_mito: mM_per_s {pub: out};
    var Vmax_n_mito: mM_per_s {init: 0.05557};
    var Km_O2: mM {pub: in};
    var Km_ADP: mM {pub: in};
    var Km_PYR: mM {pub: in};
    // isComputationalComponentFor: #property_152; physicalPropertyOf #entity_17; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Oxygen in the neuron.
    var O2n: mM {pub: in};
    // isComputationalComponentFor: #property_153; #entity_42; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:16761; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Concentration of ADP in neuron during adenylate kinase equilibrium
    var ADPn: mM {pub: in};
    // isComputationalComponentFor: #property_154; physicalPropertyOf #entity_11; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of pyruvate in the neuron.
    var PYRn: mM {pub: in};
    // isComputationalComponentFor: #property_155; physicalPropertyOf #entity_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the neuron of the brain.
    var ATPn: mM {pub: in};
    var rATP_mito: dimensionless {pub: in};
    var aATP_mito: dimensionless {pub: in};
    Vn_mito = Vmax_n_mito*(O2n/(O2n+Km_O2))*(ADPn/(ADPn+Km_ADP))*(PYRn/(PYRn+Km_PYR))*(1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp(-aATP_mito*(1{dimensionless}*(ATPn/ADPn-1{dimensionless}*rATP_mito)))));
  enddef;

  def comp Vne_LAC as
    // isComputationalComponentFor: #property_156; physicalPropertyOf #process_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Lactate exchange between neuron and extracellular space.
    var Vne_LAC: mM_per_s {pub: out};
    var Vmax_ne_LAC: mM_per_s {init: 0.1978};
    var Km_ne_LAC: mM {init: 0.09314};
    // isComputationalComponentFor: #property_157; physicalPropertyOf #entity_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Lactate in the neuron.
    var LACn: mM {pub: in};
    // isComputationalComponentFor: #property_158; physicalPropertyOf #entity_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Lactate in the extracellular space.
    var LACe: mM {pub: in};
    Vne_LAC = Vmax_ne_LAC*(LACn/(LACn+Km_ne_LAC)-LACe/(LACe+Km_ne_LAC));
  enddef;

  def comp Vn_ATPase as
    // isComputationalComponentFor: #property_159; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of ATPase (excluding Na-ATPase)
    var Vn_ATPase: mM_per_s {pub: out};
    var Vmax_n_ATPase: mM_per_s {init: 0.04889};
    // isComputationalComponentFor: #property_160; physicalPropertyOf #entity_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the neuron of the brain.
    var ATPn: mM {pub: in};
    Vn_ATPase = Vmax_n_ATPase*(ATPn/(ATPn+0.001{mM}));
  enddef;

  def comp Vn_ck as
    // isComputationalComponentFor: #property_161; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Creatine kinase
    var Vn_ck: mM_per_s {pub: out};
    var krn_ck: per_mM_per_s {init: 0.015};
    var kfn_ck: per_mM_per_s {init: 0.0524681};
    // isComputationalComponentFor: #property_162; #entity_16; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17287; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in change in concentration of phosphocreatine in the neuron.
    var PCrn: mM {pub: in};
    // isComputationalComponentFor: #property_163; physicalPropertyOf #entity_42; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Concentration of ADP in neuron during adenylate kinase equilibrium
    var ADPn: mM {pub: in};
    // isComputationalComponentFor: #property_164; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    var CRn: mM {pub: in};
    // isComputationalComponentFor: #property_165; physicalPropertyOf #entity_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the neuron of the brain.
    var ATPn: mM {pub: in};
    Vn_ck = kfn_ck*PCrn*ADPn-krn_ck*CRn*ATPn;
  enddef;

  def comp Vcn_O2 as
    // isComputationalComponentFor: #property_166; physicalPropertyOf #process_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Oxygen exchange between the capillary and the neurons.
    var Vcn_O2: mM_per_s {pub: out};
    var nh_O2: dimensionless {init: 2.7};
    var PScapn: per_s {init: 0.2202};
    var Ko2: mM {pub: in};
    var Vn: dimensionless {pub: in};
    var HbOP: mM {pub: in};
    // isComputationalComponentFor: #property_167; physicalPropertyOf #entity_18; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of oxygen in the capillary.
    var O2c: mM {pub: in};
    // isComputationalComponentFor: #property_168; physicalPropertyOf #entity_17; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Oxygen in the neuron.
    var O2n: mM {pub: in};
    Vcn_O2 = PScapn/Vn*(Ko2*pow(HbOP/O2c-1.0{dimensionless}, -1.0{dimensionless}/nh_O2)-O2n);
  enddef;

  def comp Vg_leak_Na as
    // isComputationalComponentFor: #property_169; physicalPropertyOf #process_9; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Sodium leak from the extracellular space to the astrocyte.
    var Vg_leak_Na: mM_per_s {pub: out};
    var gg_NA: mS_per_cm2 {init: 0.00325};
    var Sm_g: per_cm {pub: in};
    var Vm: mV {pub: in};
    var Vg: dimensionless {pub: in};
    var RT: mV_C_per_mol {pub: in};
    var F: C_per_mole {pub: in};
    var NAe: mM {pub: in};
    // isComputationalComponentFor: #property_170; physicalPropertyOf #entity_21; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: rate of change in the concentration of sodium in the astrocyte.
    var NAg: mM {pub: in};
    Vg_leak_Na = Sm_g/Vg*(gg_NA/F)*(RT/F*ln(NAe/NAg)-Vm);
  enddef;

  def comp Vg_pump as
    // isComputationalComponentFor: #property_171; physicalPropertyOf #process_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Sodium exchange from astrocyte to the extracellular space.
    var Vg_pump: mM_per_s {pub: out};
    var kpump: cm_per_mM_per_s {pub: in};
    var Km_pump: mM {pub: in};
    var Sm_g: per_cm {pub: in};
    var Vg: dimensionless {pub: in};
    // isComputationalComponentFor: #property_172; physicalPropertyOf #entity_35; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the astrocyte.
    var ATPg: mM {pub: in};
    // isComputationalComponentFor: #property_173; physicalPropertyOf #entity_21; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: rate of change in the concentration of sodium in the astrocyte.
    var NAg: mM {pub: in};
    Vg_pump = Sm_g/Vg*kpump*ATPg*NAg*pow(1{dimensionless}+ATPg/Km_pump, -1{dimensionless});
  enddef;

  def comp Veg_GLC as
    // isComputationalComponentFor: #property_174; #process_13; description ; #sink_9; hasMultiplier 1.0; #entity_25; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17234; #source_9; hasMultiplier 1.0; #entity_6; part_of #entity_3; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17234; name Glucose exchange between the extracellular space and astrocytes.; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Glucose exchange between the extracellular space and astrocytes.
    var Veg_GLC: mM_per_s {pub: out};
    var Km_eg_GLC: mM {init: 3.53};
    var Vm_eg_GLC: mM_per_s {init: 0.038089};
    // isComputationalComponentFor: #property_175; physicalPropertyOf #entity_25; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the astrocyte.
    var GLCg: mM {pub: in};
    // isComputationalComponentFor: #property_176; physicalPropertyOf #entity_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the extracellular space.
    var GLCe: mM {pub: in};
    var KO1: dimensionless {pub: in};
    Veg_GLC = KO1*Vm_eg_GLC*(GLCe/(GLCe+Km_eg_GLC)-GLCg/(GLCg+Km_eg_GLC));
  enddef;

  def comp Vcg_GLC as
    // isComputationalComponentFor: #property_177; physicalPropertyOf #process_12; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Glucose exchange between capillary and astrocytes.
    var Vcg_GLC: mM_per_s {pub: out};
    var Km_cg_GLC: mM {init: 9.92};
    var Vm_cg_GLC: mM_per_s {init: 0.0098394};
    // isComputationalComponentFor: #property_178; physicalPropertyOf #entity_25; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the astrocyte.
    var GLCg: mM {pub: in};
    // isComputationalComponentFor: #property_179; physicalPropertyOf #entity_26; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the capillary.
    var GLCc: mM {pub: in};
    Vcg_GLC = Vm_cg_GLC*(GLCc/(GLCc+Km_cg_GLC)-GLCg/(GLCg+Km_cg_GLC));
  enddef;

  def comp Vg_hk as
    // isComputationalComponentFor: #property_180; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Hexokinase
    var Vg_hk: mM_per_s {pub: out};
    var Vmax_g_hk: mM_per_s {init: 0.050461};
    var Km_GLC: mM {pub: in};
    // isComputationalComponentFor: #property_181; physicalPropertyOf #entity_25; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the astrocyte.
    var GLCg: mM {pub: in};
    // isComputationalComponentFor: #property_182; physicalPropertyOf #entity_35; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the astrocyte.
    var ATPg: mM {pub: in};
    // isComputationalComponentFor: #property_183; physicalPropertyOf #entity_27; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose-6-phosphate in the astrocyte
    var G6Pg: mM {pub: in};
    var G6P_inh_hk: mM {pub: in};
    var aG6P_inh_hk: dimensionless {pub: in};
    Vg_hk = Vmax_g_hk*ATPg*(GLCg/(GLCg+Km_GLC))*(1{per_mM}-1{per_mM}/(1{dimensionless}+exp(-aG6P_inh_hk*(1{per_mM}*(G6Pg-G6P_inh_hk)))));
  enddef;

  def comp Vg_pgi as
    // isComputationalComponentFor: #property_184; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Phosphoglucose isomerase
    var Vg_pgi: mM_per_s {pub: out};
    var Vmaxf_g_pgi: mM_per_s {init: 0.5};
    var Vmaxr_g_pgi: mM_per_s {init: 0.45};
    var Km_G6P: mM {pub: in};
    var Km_F6P_pgi: mM {pub: in};
    // isComputationalComponentFor: #property_185; #entity_28; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:88003; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of fructose-6-phosphate in the astrocyte
    var F6Pg: mM {pub: in};
    // isComputationalComponentFor: #property_186; physicalPropertyOf #entity_27; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose-6-phosphate in the astrocyte
    var G6Pg: mM {pub: in};
    Vg_pgi = Vmaxf_g_pgi*(G6Pg/(G6Pg+Km_G6P))-Vmaxr_g_pgi*(F6Pg/(F6Pg+Km_F6P_pgi));
  enddef;

  def comp Vg_pfk as
    // isComputationalComponentFor: #property_187; physicalPropertyOf #process_14; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Phosphofructokinase metabolism in the astrocyte
    var Vg_pfk: mM_per_s {pub: out};
    var kg_pfk: per_s {init: 0.403};
    var Km_F6P_pfk: mM {pub: in};
    var Ki_ATP: mM {pub: in};
    var nH: dimensionless {pub: in};
    // isComputationalComponentFor: #property_188; physicalPropertyOf #entity_35; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the astrocyte.
    var ATPg: mM {pub: in};
    // isComputationalComponentFor: #property_189; physicalPropertyOf #entity_28; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of fructose-6-phosphate in the astrocyte
    var F6Pg: mM {pub: in};
    Vg_pfk = kg_pfk*ATPg*(F6Pg/(F6Pg+Km_F6P_pfk))*pow(1{dimensionless}+pow(ATPg/Ki_ATP, nH), -1{dimensionless});
  enddef;

  def comp Vg_pgk as
    // isComputationalComponentFor: #property_190; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Phosphoglycerate kinase
    var Vg_pgk: mM_per_s {pub: out};
    var kg_pgk: per_mM_per_s {init: 0.2514};
    // isComputationalComponentFor: #property_191; physicalPropertyOf #entity_43; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Concentration of ADP in astrocyte during adenylate kinase equilibrium
    var ADPg: mM {pub: in};
    // isComputationalComponentFor: #property_192; #entity_29; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17138; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glyceraldehyde-3-phosphate in the astrocyte.
    var GAPg: mM {pub: in};
    var NADg: mM {pub: in};
    // isComputationalComponentFor: #property_193; physicalPropertyOf #entity_34; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the conc of Nicotinamide adenine dinucleotide reduced in astrocyte.
    var NADHg: mM {pub: in};
    Vg_pgk = kg_pgk*GAPg*ADPg*(NADg/NADHg);
  enddef;

  def comp Vg_pk as
    // isComputationalComponentFor: #property_194; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Pyruvate kinase
    var Vg_pk: mM_per_s {pub: out};
    var kg_pk: per_mM_per_s {init: 2.73};
    // isComputationalComponentFor: #property_195; #entity_30; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:18021; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in concentration of Phosphoenolpyruvate in the astrocyte.
    var PEPg: mM {pub: in};
    // isComputationalComponentFor: #property_196; physicalPropertyOf #entity_43; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Concentration of ADP in astrocyte during adenylate kinase equilibrium
    var ADPg: mM {pub: in};
    Vg_pk = kg_pk*PEPg*ADPg;
  enddef;

  def comp Vg_ldh as
    // isComputationalComponentFor: #property_197; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Astrocytic metabolism of Lactate dehydrogenase
    var Vg_ldh: mM_per_s {pub: out};
    var kfg_ldh: per_mM_per_s {init: 6.2613};
    var krg_ldh: per_mM_per_s {init: 0.54682};
    // isComputationalComponentFor: #property_198; #entity_31; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:15361; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in pyruvate in the astrocyte.
    var PYRg: mM {pub: in};
    // isComputationalComponentFor: #property_199; physicalPropertyOf #entity_34; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the conc of Nicotinamide adenine dinucleotide reduced in astrocyte.
    var NADHg: mM {pub: in};
    // isComputationalComponentFor: #property_200; physicalPropertyOf #entity_32; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: rate of change in the concentration of Lactate in the astrocyte
    var LACg: mM {pub: in};
    var NADg: mM {pub: in};
    Vg_ldh = kfg_ldh*PYRg*NADHg-krg_ldh*LACg*NADg;
  enddef;

  def comp Vg_mito as
    // isComputationalComponentFor: #property_201; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Mitochondrial oxidation of pyruvate
    var Vg_mito: mM_per_s {pub: out};
    var Vmax_g_mito: mM_per_s {init: 0.008454};
    var Km_O2: mM {pub: in};
    var Km_ADP: mM {pub: in};
    var Km_PYR: mM {pub: in};
    // isComputationalComponentFor: #property_202; physicalPropertyOf #entity_37; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Oxygen in the astrocyte.
    var O2g: mM {pub: in};
    // isComputationalComponentFor: #property_203; physicalPropertyOf #entity_43; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Concentration of ADP in astrocyte during adenylate kinase equilibrium
    var ADPg: mM {pub: in};
    // isComputationalComponentFor: #property_204; physicalPropertyOf #entity_31; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in pyruvate in the astrocyte.
    var PYRg: mM {pub: in};
    // isComputationalComponentFor: #property_205; physicalPropertyOf #entity_35; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the astrocyte.
    var ATPg: mM {pub: in};
    var rATP_mito: dimensionless {pub: in};
    var aATP_mito: dimensionless {pub: in};
    Vg_mito = Vmax_g_mito*(O2g/(O2g+Km_O2))*(ADPg/(ADPg+Km_ADP))*(PYRg/(PYRg+Km_PYR))*(1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp(1{dimensionless}*(-aATP_mito)*(ATPg/ADPg-1{dimensionless}*rATP_mito))));
  enddef;

  def comp Vge_LAC as
    // isComputationalComponentFor: #property_206; #process_15; description ; #sink_10; hasMultiplier 1.0; hasPhysicalEntityReference #entity_13; #source_10; hasMultiplier 1.0; hasPhysicalEntityReference #entity_32; name Lactate exchange between the astrocyte and the extracellular space.; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Lactate exchange between the astrocyte and the extracellular space.
    var Vge_LAC: mM_per_s {pub: out};
    var Vmax_ge_LAC: mM_per_s {init: 0.086124};
    var Km_ge_LAC: mM {init: 0.22163};
    // isComputationalComponentFor: #property_207; physicalPropertyOf #entity_32; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: rate of change in the concentration of Lactate in the astrocyte
    var LACg: mM {pub: in};
    // isComputationalComponentFor: #property_208; physicalPropertyOf #entity_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Lactate in the extracellular space.
    var LACe: mM {pub: in};
    Vge_LAC = Vmax_ge_LAC*(LACg/(LACg+Km_ge_LAC)-LACe/(LACe+Km_ge_LAC));
  enddef;

  def comp Vgc_LAC as
    // isComputationalComponentFor: #property_209; #process_16; description ; #sink_11; hasMultiplier 1.0; hasPhysicalEntityReference #entity_33; #source_11; hasMultiplier 1.0; #entity_32; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:24996; name Lactate exchange between the astrocyte and the capillary.; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Lactate exchange between the astrocyte and the capillary.
    var Vgc_LAC: mM_per_s {pub: out};
    var Vmax_gc_LAC: mM_per_s {init: 0.00021856};
    var Km_gc_LAC: mM {init: 0.12862};
    // isComputationalComponentFor: #property_210; physicalPropertyOf #entity_32; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: rate of change in the concentration of Lactate in the astrocyte
    var LACg: mM {pub: in};
    // isComputationalComponentFor: #property_211; #entity_33; part_of #entity_19; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:24996; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Lactate in the capillary.
    var LACc: mM {pub: in};
    Vgc_LAC = Vmax_gc_LAC*(LACg/(LACg+Km_gc_LAC)-LACc/(LACc+Km_gc_LAC));
  enddef;

  def comp Vg_ATPase as
    // description: Metabolism of ATPase (excluding Na-ATPase) in the astrocyte.
    var Vg_ATPase: mM_per_s {pub: out};
    var Vmax_g_ATPase: mM_per_s {init: 0.035657};
    // isComputationalComponentFor: #property_212; physicalPropertyOf #entity_35; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the astrocyte.
    var ATPg: mM {pub: in};
    Vg_ATPase = Vmax_g_ATPase*(ATPg/(ATPg+0.001{mM}));
  enddef;

  def comp Vg_ck as
    // isComputationalComponentFor: #property_213; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Metabolism of creatine kinase in the astrocyte
    var Vg_ck: mM_per_s {pub: out};
    var krg_ck: per_mM_per_s {init: 0.02073};
    var kfg_ck: per_mM_per_s {init: 0.0243};
    // isComputationalComponentFor: #property_214; physicalPropertyOf #entity_36; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of phosphocreatine in the astrocyte.
    var PCrg: mM {pub: in};
    // isComputationalComponentFor: #property_215; physicalPropertyOf #entity_43; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Concentration of ADP in astrocyte during adenylate kinase equilibrium
    var ADPg: mM {pub: in};
    // isComputationalComponentFor: #property_216; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    var CRg: mM {pub: in};
    // isComputationalComponentFor: #property_217; physicalPropertyOf #entity_35; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the astrocyte.
    var ATPg: mM {pub: in};
    Vg_ck = kfg_ck*PCrg*ADPg-krg_ck*CRg*ATPg;
  enddef;

  def comp Vcg_O2 as
    // isComputationalComponentFor: #property_218; physicalPropertyOf #process_17; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Oxygen exchange between capillary and astrocytes
    var Vcg_O2: mM_per_s {pub: out};
    var PScapg: per_s {init: 0.2457};
    var Ko2: mM {pub: in};
    var nh_O2: dimensionless {pub: in};
    var Vg: dimensionless {pub: in};
    var HbOP: mM {pub: in};
    // isComputationalComponentFor: #property_219; physicalPropertyOf #entity_18; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of oxygen in the capillary.
    var O2c: mM {pub: in};
    // isComputationalComponentFor: #property_220; physicalPropertyOf #entity_37; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Oxygen in the astrocyte.
    var O2g: mM {pub: in};
    Vcg_O2 = PScapg/Vg*(Ko2*pow(HbOP/O2c-1.0{dimensionless}, -1.0{dimensionless}/nh_O2)-O2g);
  enddef;

  def comp Vc_O2 as
    // description: Blood flow contribution to capillary O2
    var Vc_O2: mM_per_s {pub: out};
    // description: Blood flow entering the capillary.
    var Fin_t: per_s {pub: in};
    var Vc: dimensionless {pub: in};
    var O2a: mM {pub: in};
    // isComputationalComponentFor: #property_221; physicalPropertyOf #entity_18; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of oxygen in the capillary.
    var O2c: mM {pub: in};
    Vc_O2 = 2.0{dimensionless}*(Fin_t/Vc)*(O2a-O2c);
  enddef;

  def comp Vc_GLC as
    var Vc_GLC: mM_per_s {pub: out};
    // description: Blood flow entering the capillary.
    var Fin_t: per_s {pub: in};
    var Vc: dimensionless {pub: in};
    var GLCa: mM {pub: in};
    // isComputationalComponentFor: #property_222; physicalPropertyOf #entity_26; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the capillary.
    var GLCc: mM {pub: in};
    Vc_GLC = 2.0{dimensionless}*(Fin_t/Vc)*(GLCa-GLCc);
  enddef;

  def comp Vce_GLC as
    // isComputationalComponentFor: #property_223; physicalPropertyOf #process_18; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Glucose exchange between capillary and extracellular space.
    var Vce_GLC: mM_per_s {pub: out};
    var Km_ce_GLC: mM {init: 8.4568};
    var Vm_ce_GLC: mM_per_s {init: 0.0489};
    // isComputationalComponentFor: #property_224; physicalPropertyOf #entity_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the extracellular space.
    var GLCe: mM {pub: in};
    // isComputationalComponentFor: #property_225; physicalPropertyOf #entity_26; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose in the capillary.
    var GLCc: mM {pub: in};
    Vce_GLC = Vm_ce_GLC*(GLCc/(GLCc+Km_ce_GLC)-GLCe/(GLCe+Km_ce_GLC));
  enddef;

  def comp Vc_LAC as
    // isComputationalComponentFor: #property_226; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Lactate entering the capillary
    var Vc_LAC: mM_per_s {pub: out};
    // description: Blood flow entering the capillary.
    var Fin_t: per_s {pub: in};
    var Vc: dimensionless {pub: in};
    var LACa: mM {pub: in};
    // isComputationalComponentFor: #property_227; physicalPropertyOf #entity_33; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Lactate in the capillary.
    var LACc: mM {pub: in};
    Vc_LAC = 2.0{dimensionless}*(Fin_t/Vc)*(LACa-LACc);
  enddef;

  def comp Vec_LAC as
    // isComputationalComponentFor: #property_228; #process_19; description ; #sink_14; hasMultiplier 1.0; hasPhysicalEntityReference #entity_33; #source_14; hasMultiplier 1.0; hasPhysicalEntityReference #entity_13; name Lactate exchange between extracellular space and capillary.; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Lactate exchange between extracellular space and capillaries.
    var Vec_LAC: mM_per_s {pub: out};
    var Km_ec_LAC: mM {init: 0.764818};
    var Vm_ec_LAC: mM_per_s {init: 0.0325};
    // isComputationalComponentFor: #property_229; physicalPropertyOf #entity_13; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Lactate in the extracellular space.
    var LACe: mM {pub: in};
    // isComputationalComponentFor: #property_230; physicalPropertyOf #entity_33; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Lactate in the capillary.
    var LACc: mM {pub: in};
    Vec_LAC = Vm_ec_LAC*(LACe/(LACe+Km_ec_LAC)-LACc/(LACc+Km_ec_LAC));
  enddef;

  def comp Vnc_CO2 as
    // isComputationalComponentFor: #property_231; #process_20; description ; #sink_15; hasMultiplier 1.0; hasPhysicalEntityReference #entity_39; #source_15; hasMultiplier 1.0; #entity_40; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:16526; name CO2 exchange from neuron and capillary.; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Carbon Dioxide exchange between neuron and capillary
    var Vnc_CO2: mM_per_s {pub: out};
    // isComputationalComponentFor: #property_232; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Neuronal metabolism of Mitochondrial oxidation of pyruvate
    var Vn_mito: mM_per_s {pub: in};
    Vnc_CO2 = 3.0{dimensionless}*Vn_mito;
  enddef;

  def comp Vgc_CO2 as
    // isComputationalComponentFor: #property_233; physicalPropertyOf #process_21; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Carbon Dioxide exchange between astrocyte and capillary.
    var Vgc_CO2: mM_per_s {pub: out};
    // isComputationalComponentFor: #property_234; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Mitochondrial oxidation of pyruvate
    var Vg_mito: mM_per_s {pub: in};
    Vgc_CO2 = 3.0{dimensionless}*Vg_mito;
  enddef;

  def comp Vn_stim_GLU as
    var Vn_stim_GLU: mM_per_s {pub: out};
    var R_GLU_NA: dimensionless {pub: in};
    var Km_GLU: mM {pub: in};
    // isComputationalComponentFor: #property_235; #entity_20; description ; name Glutamate; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in concentration of glutamate in the neuron
    var GLUn: mM {pub: in};
    var KO2: dimensionless {pub: in};
    var Vn_stim: mM_per_s {pub: in};
    Vn_stim_GLU = Vn_stim*R_GLU_NA*KO2*(GLUn/(GLUn+Km_GLU));
  enddef;

  def comp Vg_gs as
    var Vg_gs: mM_per_s {pub: out};
    var Vmax_g_gs: mM_per_s {init: 0.3};
    var Km_GLU: mM {pub: in};
    var Km_ATP: mM {pub: in};
    // isComputationalComponentFor: #property_236; #entity_24; name Glutamate; description ; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the intracellular concentration of glutamate in the astrocyte.
    var GLUg: mM {pub: in};
    // isComputationalComponentFor: #property_237; physicalPropertyOf #entity_35; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the astrocyte.
    var ATPg: mM {pub: in};
    Vg_gs = Vmax_g_gs*(GLUg/(GLUg+Km_GLU)*(ATPg/(ATPg+Km_ATP)));
  enddef;

  def comp Veg_GLU as
    // isComputationalComponentFor: #property_238; physicalPropertyOf #process_11; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Glutamate exchange between the extracellular space and the astrocyte.
    var Veg_GLU: mM_per_s {pub: out};
    var Vmax_eg_GLU: mM_per_s {init: 0.0208};
    var Km_GLU: mM {pub: in};
    // isComputationalComponentFor: #property_239; physicalPropertyOf #entity_23; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glutamate in the extracellular space.
    var GLUe: mM {pub: in};
    Veg_GLU = Vmax_eg_GLU*(GLUe/(GLUe+Km_GLU));
  enddef;

  def comp Vc_CO2 as
    var Vc_CO2: mM_per_s {pub: out};
    // description: Blood flow entering the capillary.
    var Fin_t: per_s {pub: in};
    var Vc: dimensionless {pub: in};
    var CO2a: mM {pub: in};
    // isComputationalComponentFor: #property_240; physicalPropertyOf #entity_39; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Carbon Dioxide in a capillary in the brain.
    var CO2c: mM {pub: in};
    Vc_CO2 = 2.0{dimensionless}*(Fin_t/Vc)*(CO2c-CO2a);
  enddef;

  def comp Vg_glys as
    // isComputationalComponentFor: #property_241; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: glycogen synthase flow rate
    var Vg_glys: mM_per_s {pub: out};
    var Vmax_glys: mM_per_s {init: 0.0001528};
    var Km_G6P_glys: mM {init: 0.5};
    // isComputationalComponentFor: #property_242; physicalPropertyOf #entity_27; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of glucose-6-phosphate in the astrocyte
    var G6Pg: mM {pub: in};
    // isComputationalComponentFor: #property_243; physicalPropertyOf #entity_38; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change of glycogen in the astrocyte.
    var GLYg: mM {pub: in};
    var GLY_inh: mM {pub: in};
    var aGLY_inh: dimensionless {pub: in};
    Vg_glys = Vmax_glys*(G6Pg/(G6Pg+Km_G6P_glys))*(1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp(-aGLY_inh*(1{per_mM}*(GLYg-GLY_inh)))));
  enddef;

  def comp Vg_glyp as
    // isComputationalComponentFor: #property_244; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Glycogen phosphorylase flow rate in the astrocyte
    var Vg_glyp: mM_per_s {pub: out};
    var Vmax_glyp: mM_per_s {init: 4.922e-5};
    var Km_GLY: mM {init: 1.0};
    var deltaVt_GLY: dimensionless;
    var unitstepSB2: dimensionless {pub: in};
    var stim: dimensionless {pub: in};
    var to: s {pub: in};
    var to_GLY: s {pub: in};
    var tend_GLY: s {pub: in};
    var sr_GLY: dimensionless {pub: in};
    var t1: s {pub: in};
    var delta_GLY: dimensionless {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    // isComputationalComponentFor: #property_245; #entity_38; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:28087; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change of glycogen in the astrocyte.
    var GLYg: mM {pub: in};
    var KO3: dimensionless {pub: in};
    Vg_glyp = Vmax_glyp*(GLYg/(GLYg+Km_GLY))*deltaVt_GLY;
    deltaVt_GLY = 1{dimensionless}+stim*(delta_GLY*KO3*(1{dimensionless}/(1{dimensionless}+exp(1{per_s}*(-sr_GLY)*(time-(to+to_GLY)))))*(1{dimensionless}-unitstepSB2));
  enddef;

  def comp Fin_t as
    // description: Blood flow entering the capillary.
    var Fin_t: per_s {pub: out};
    var CBF0: per_s {init: 0.012};
    var stim: dimensionless {pub: in};
    var to: s {pub: in};
    var tend: s {pub: in};
    var sr: dimensionless {pub: in};
    var t1: s {pub: in};
    var deltaf: dimensionless {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    Fin_t = CBF0+stim*CBF0*deltaf*(1{dimensionless}/(1{dimensionless}+exp(1{per_s}*(-sr)*(time-(to+t1-3{second})))))-stim*CBF0*deltaf*(1{dimensionless}/(1{dimensionless}+exp(1{per_s}*(-sr)*(time-(to+tend+t1+3{second})))));
  enddef;

  def comp Fout_t as
    // description: Blood flow out of the capillary.
    var Fout_t: per_s {pub: out};
    // description: Blood flow entering the capillary.
    var Fin_t: per_s {pub: in};
    var CBF0: per_s {pub: in};
    var Vv: dimensionless {pub: in};
    var Vv0: dimensionless {pub: in};
    var tv: s {pub: in};
    Fout_t = CBF0*((sqr(Vv/Vv0)+tv*pow(Vv/Vv0, -0.5{dimensionless})*(Fin_t/Vv0))/(1{dimensionless}+CBF0*tv*pow(Vv/Vv0, -0.5{dimensionless})*(1{dimensionless}/Vv0)));
  enddef;

  def comp NADn as
    var NADn: mM {pub: out};
    var NADH_n_tot: mM {init: 0.22};
    // isComputationalComponentFor: #property_246; physicalPropertyOf #entity_14; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of Nicotinamide adenine dinucleotide (reduced) in neuron
    var NADHn: mM {pub: in};
    NADn = NADH_n_tot-NADHn;
  enddef;

  def comp NADg as
    var NADg: mM {pub: out};
    var NADH_g_tot: mM {init: 0.22};
    // isComputationalComponentFor: #property_247; #entity_34; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:16908; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the conc of Nicotinamide adenine dinucleotide reduced in astrocyte.
    var NADHg: mM {pub: in};
    NADg = NADH_g_tot-NADHg;
  enddef;

  def comp CRn as
    // isComputationalComponentFor: #property_248; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    var CRn: mM {pub: out};
    var PCrn_tot: mM {init: 5.0};
    // isComputationalComponentFor: #property_249; physicalPropertyOf #entity_16; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in change in concentration of phosphocreatine in the neuron.
    var PCrn: mM {pub: in};
    CRn = PCrn_tot-PCrn;
  enddef;

  def comp CRg as
    // isComputationalComponentFor: #property_250; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    var CRg: mM {pub: out};
    var PCrg_tot: mM {init: 5.0};
    // isComputationalComponentFor: #property_251; #entity_36; part_of #entity_22; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17287; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of phosphocreatine in the astrocyte.
    var PCrg: mM {pub: in};
    CRg = PCrg_tot-PCrg;
  enddef;

  def comp ADPn as
    // isComputationalComponentFor: #property_252; physicalPropertyOf #entity_42; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Concentration of ADP in neuron during adenylate kinase equilibrium
    var ADPn: mM {pub: out};
    // isComputationalComponentFor: #property_253; physicalPropertyOf #entity_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the neuron of the brain.
    var ATPn: mM {pub: in};
    var ATPtot: mM {pub: in};
    var qak: dimensionless {pub: in};
    ADPn = ATPn/2{dimensionless}*(-qak+sqrt(sqr(qak)+4{dimensionless}*qak*(ATPtot/ATPn-1{dimensionless})));
  enddef;

  def comp ADPg as
    // isComputationalComponentFor: #property_254; physicalPropertyOf #entity_43; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Concentration of ADP in astrocyte during adenylate kinase equilibrium
    var ADPg: mM {pub: out};
    // isComputationalComponentFor: #property_255; physicalPropertyOf #entity_35; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the astrocyte.
    var ATPg: mM {pub: in};
    var ATPtot: mM {pub: in};
    var qak: dimensionless {pub: in};
    ADPg = ATPg/2{dimensionless}*(-qak+sqrt(sqr(qak)+4{dimensionless}*qak*(ATPtot/ATPg-1{dimensionless})));
  enddef;

  def comp u_n as
    var u_n: dimensionless {pub: out};
    // isComputationalComponentFor: #property_256; physicalPropertyOf #entity_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the neuron of the brain.
    var ATPn: mM {pub: in};
    var ATPtot: mM {pub: in};
    var qak: dimensionless {pub: in};
    u_n = sqr(qak)+4{dimensionless}*qak*(ATPtot/ATPn-1{dimensionless});
  enddef;

  def comp u_g as
    var u_g: dimensionless {pub: out};
    // isComputationalComponentFor: #property_257; physicalPropertyOf #entity_35; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the astrocyte.
    var ATPg: mM {pub: in};
    var ATPtot: mM {pub: in};
    var qak: dimensionless {pub: in};
    u_g = sqr(qak)+4{dimensionless}*qak*(ATPtot/ATPg-1{dimensionless});
  enddef;

  def comp dAMP_dATPn as
    var dAMP_dATPn: dimensionless {pub: out};
    // isComputationalComponentFor: #property_258; physicalPropertyOf #entity_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the neuron of the brain.
    var ATPn: mM {pub: in};
    var ATPtot: mM {pub: in};
    var u_n: dimensionless {pub: in};
    var qak: dimensionless {pub: in};
    dAMP_dATPn = qak/2{dimensionless}+qak*(ATPtot/(ATPn*sqrt(u_n)))-(1{dimensionless}+0.5{dimensionless}*sqrt(u_n));
  enddef;

  def comp dAMP_dATPg as
    var dAMP_dATPg: dimensionless {pub: out};
    // isComputationalComponentFor: #property_259; physicalPropertyOf #entity_35; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the astrocyte.
    var ATPg: mM {pub: in};
    var ATPtot: mM {pub: in};
    var u_g: dimensionless {pub: in};
    var qak: dimensionless {pub: in};
    dAMP_dATPg = qak/2{dimensionless}+qak*(ATPtot/(ATPg*sqrt(u_g)))-(1{dimensionless}+0.5{dimensionless}*sqrt(u_g));
  enddef;

  def comp AMPn as
    var AMPn: mM {pub: out};
    var ATPtot: mM {pub: in};
    // isComputationalComponentFor: #property_260; physicalPropertyOf #entity_15; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the neuron of the brain.
    var ATPn: mM {pub: in};
    // isComputationalComponentFor: #property_261; physicalPropertyOf #entity_42; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Concentration of ADP in neuron during adenylate kinase equilibrium
    var ADPn: mM {pub: in};
    AMPn = ATPtot-(ATPn+ADPn);
  enddef;

  def comp AMPg as
    var AMPg: mM {pub: out};
    var ATPtot: mM {pub: in};
    // isComputationalComponentFor: #property_262; physicalPropertyOf #entity_35; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Rate of change in the concentration of adenosine triphosphate in the astrocyte.
    var ATPg: mM {pub: in};
    // isComputationalComponentFor: #property_263; #entity_43; #entity_22; description ; hasPhysicalDefinition http://identifiers.org/fma/FMA:54537; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:16761; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    // description: Concentration of ADP in astrocyte during adenylate kinase equilibrium
    var ADPg: mM {pub: in};
    AMPg = ATPtot-(ATPg+ADPg);
  enddef;

  def comp BOLD as
    var BOLD: dimensionless;
    var Vv0: dimensionless {pub: in};
    var k1: dimensionless {pub: in};
    var k2: dimensionless {pub: in};
    var k3: dimensionless {pub: in};
    var Vv: dimensionless {pub: in};
    // isComputationalComponentFor: #property_264; hasPhysicalDefinition http://identifiers.org/opb/OPB_00340
    var dHb: mM {pub: in};
    var dHb0: mM {pub: in};
    BOLD = Vv0*((k1+k2)*(1{dimensionless}-dHb/dHb0)-(k2+k3)*(1{dimensionless}-Vv/Vv0));
  enddef;

  def comp v_stim as
    // isComputationalComponentFor: #property_265; hasPhysicalDefinition http://identifiers.org/opb/OPB_00592
    // description: Neuronal Na inflow due to stimulation
    var v_stim: mM_per_s {pub: out};
    var unitpulseSB: dimensionless;
    var stim: dimensionless {pub: in};
    var to: s {pub: in};
    var tend: s {pub: in};
    var t_n_stim: s {pub: in};
    var v1_n: mM_per_s {pub: in};
    var v2_n: mM_per_s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    v_stim = stim*(v1_n+v2_n*((time-to)/t_n_stim)*exp(-((time-to)*(unitpulseSB/t_n_stim))))*unitpulseSB;
    unitpulseSB = sel
      case (time >= to) and (time <= to+tend):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
  enddef;

  def comp unitstepSB as
    var unitstepSB: dimensionless {pub: out};
    var to: s {pub: in};
    var tend: s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    unitstepSB = sel
      case time-(tend+to) >= 0{second}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
  enddef;

  def comp model_parameters as
    var Km_PYR: mM {init: 0.0632, pub: out};
    var Km_ATP: mM {init: 0.01532, pub: out};
    var Ki_ATP: mM {init: 0.7595, pub: out};
    var Km_ADP: mM {init: 0.00107, pub: out};
    var Km_O2: mM {init: 0.0029658, pub: out};
    var Km_GLC: mM {init: 0.105, pub: out};
    var Km_GLU: mM {init: 0.05, pub: out};
    var Km_G6P: mM {init: 0.5, pub: out};
    var Km_F6P_pgi: mM {init: 0.06, pub: out};
    var Km_F6P_pfk: mM {init: 0.18, pub: out};
    var Km_pump: mM {init: 0.4243, pub: out};
    var nh_O2: dimensionless {init: 2.7, pub: out};
    var Ko2: mM {init: 0.089733, pub: out};
    var kpump: cm_per_mM_per_s {init: 3.17e-7, pub: out};
    var ATPtot: mM {init: 2.379, pub: out};
    var NAe: mM {init: 150.0, pub: out};
    var nH: dimensionless {init: 4.0, pub: out};
    var O2a: mM {init: 8.34, pub: out};
    var CO2a: mM {init: 1.2, pub: out};
    var GLCa: mM {init: 4.8, pub: out};
    var LACa: mM {init: 0.313, pub: out};
    var nOP: dimensionless {init: 15.0, pub: out};
    var NAero: dimensionless {init: 3.0, pub: out};
    var Rng: dimensionless {init: 1.8, pub: out};
    var Reg: dimensionless {init: 0.8, pub: out};
    var Ren: dimensionless {init: 0.4444444444444444, pub: out};
    var Rcn: dimensionless {init: 0.01222, pub: out};
    var Rcg: dimensionless {init: 0.022, pub: out};
    var Rce: dimensionless {init: 0.0275, pub: out};
    var Sm_n: per_cm {init: 40500, pub: out};
    var Vm: mV {init: -70, pub: out};
    var RT: mV_C_per_mol {init: 2577340, pub: out};
    var F: C_per_mole {init: 96500, pub: out};
    var Vn: dimensionless {init: 0.45, pub: out};
    var G6P_inh_hk: mM {init: 0.6, pub: out};
    var aG6P_inh_hk: dimensionless {init: 20.0, pub: out};
    var rATP_mito: dimensionless {init: 20.0, pub: out};
    var aATP_mito: dimensionless {init: 5.0, pub: out};
    var HbOP: mM {init: 8.6, pub: out};
    var Sm_g: per_cm {init: 10500, pub: out};
    var Vg: dimensionless {init: 0.25, pub: out};
    var KO1: dimensionless {init: 1.0, pub: out};
    var Vc: dimensionless {init: 0.0055, pub: out};
    var R_GLU_NA: dimensionless {init: 0.075, pub: out};
    var KO2: dimensionless {init: 1, pub: out};
    var KO3: dimensionless {init: 1, pub: out};
    var GLY_inh: mM {init: 4.2, pub: out};
    var aGLY_inh: dimensionless {init: 20.0, pub: out};
    var CBF0: per_s {init: 0.012, pub: out};
    var Vv0: dimensionless {init: 0.0236, pub: out};
    var tv: s {init: 35.0, pub: out};
    var qak: dimensionless {init: 0.92, pub: out};
    var k1: dimensionless {init: 2.22, pub: out};
    var k2: dimensionless {init: 0.46, pub: out};
    var k3: dimensionless {init: 0.43, pub: out};
    var dHb0: mM {init: 0.064, pub: out};
    var stim: dimensionless {init: 1, pub: out};
    var to: s {init: 200, pub: out};
    var tend: s {init: 300, pub: out};
    var v1_n: mM_per_s {init: 0.041, pub: out};
    var v2_n: mM_per_s {init: 2.55, pub: out};
    var t_n_stim: s {init: 2, pub: out};
    var sr: dimensionless {init: 4.59186, pub: out};
    var t1: s {init: 2, pub: out};
    var delta_GLY: dimensionless {init: 62, pub: out};
    var deltaf: dimensionless {init: 0.42, pub: out};
    var tend_GLY: s {init: 440, pub: out};
    var to_GLY: s {init: 83, pub: out};
    var sr_GLY: dimensionless {init: 4, pub: out};
  enddef;

  def comp unitstepSB2 as
    var unitstepSB2: dimensionless {pub: out};
    var tend: s {pub: in};
    // is: http://identifiers.org/opb/OPB_01023
    var time: s {pub: in};
    var to: s {pub: in};
    var tend_GLY: s {pub: in};
    var to_GLY: s {pub: in};
    unitstepSB2 = sel
      case time-(tend_GLY+to+to_GLY) >= 0{second}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
  enddef;
  def map between Vn_pgk and PEPn for
    vars Vn_pgk and Vn_pgk;
  enddef;
  def map between Vv and dHb for
    vars Vv and Vv;
  enddef;
  def map between model_parameters and ADPg for
    vars qak and qak;
    vars ATPtot and ATPtot;
  enddef;
  def map between ATPg and ADPg for
    vars ATPg and ATPg;
  enddef;
  def map between LACc and Vec_LAC for
    vars LACc and LACc;
  enddef;
  def map between Vcg_GLC and GLCc for
    vars Vcg_GLC and Vcg_GLC;
  enddef;
  def map between Vg_pfk and F6Pg for
    vars Vg_pfk and Vg_pfk;
  enddef;
  def map between Vg_pk and ATPg for
    vars Vg_pk and Vg_pk;
  enddef;
  def map between Vg_mito and ATPg for
    vars Vg_mito and Vg_mito;
  enddef;
  def map between Veg_GLC and GLCg for
    vars Veg_GLC and Veg_GLC;
  enddef;
  def map between NADn and Vn_pgk for
    vars NADn and NADn;
  enddef;
  def map between Vg_hk and G6Pg for
    vars Vg_hk and Vg_hk;
  enddef;
  def map between Vc_GLC and GLCc for
    vars Vc_GLC and Vc_GLC;
  enddef;
  def map between Vg_ldh and NADHg for
    vars Vg_ldh and Vg_ldh;
  enddef;
  def map between environment and PYRn for
    vars time and time;
  enddef;
  def map between environment and dHb for
    vars time and time;
  enddef;
  def map between Vg_ck and ATPg for
    vars Vg_ck and Vg_ck;
  enddef;
  def map between model_parameters and Vg_mito for
    vars Km_PYR and Km_PYR;
    vars rATP_mito and rATP_mito;
    vars Km_ADP and Km_ADP;
    vars Km_O2 and Km_O2;
    vars aATP_mito and aATP_mito;
  enddef;
  def map between model_parameters and Vg_gs for
    vars Km_GLU and Km_GLU;
    vars Km_ATP and Km_ATP;
  enddef;
  def map between model_parameters and LACc for
    vars Rcg and Rcg;
    vars Rce and Rce;
  enddef;
  def map between model_parameters and Veg_GLU for
    vars Km_GLU and Km_GLU;
  enddef;
  def map between environment and O2n for
    vars time and time;
  enddef;
  def map between model_parameters and GLUn for
    vars Rng and Rng;
  enddef;
  def map between Vg_hk and GLCg for
    vars Vg_hk and Vg_hk;
  enddef;
  def map between model_parameters and LACe for
    vars Reg and Reg;
    vars Ren and Ren;
  enddef;
  def map between NAg and Vg_leak_Na for
    vars NAg and NAg;
  enddef;
  def map between model_parameters and ADPn for
    vars qak and qak;
    vars ATPtot and ATPtot;
  enddef;
  def map between model_parameters and CO2c for
    vars Rcg and Rcg;
    vars Rcn and Rcn;
  enddef;
  def map between environment and GLUg for
    vars time and time;
  enddef;
  def map between PYRn and Vn_ldh for
    vars PYRn and PYRn;
  enddef;
  def map between GLCg and Veg_GLC for
    vars GLCg and GLCg;
  enddef;
  def map between ADPn and Vn_pk for
    vars ADPn and ADPn;
  enddef;
  def map between environment and PCrg for
    vars time and time;
  enddef;
  def map between GLUe and Veg_GLU for
    vars GLUe and GLUe;
  enddef;
  def map between Vg_hk and ATPg for
    vars Vg_hk and Vg_hk;
  enddef;
  def map between PCrn and CRn for
    vars PCrn and PCrn;
  enddef;
  def map between ATPg and u_g for
    vars ATPg and ATPg;
  enddef;
  def map between model_parameters and Vcg_O2 for
    vars Ko2 and Ko2;
    vars HbOP and HbOP;
    vars Vg and Vg;
    vars nh_O2 and nh_O2;
  enddef;
  def map between Vv and Fout_t for
    vars Vv and Vv;
  enddef;
  def map between Fin_t and Vc_CO2 for
    vars Fin_t and Fin_t;
  enddef;
  def map between model_parameters and O2n for
    vars NAero and NAero;
  enddef;
  def map between ADPn and Vn_mito for
    vars ADPn and ADPn;
  enddef;
  def map between model_parameters and BOLD for
    vars k2 and k2;
    vars dHb0 and dHb0;
    vars Vv0 and Vv0;
    vars k3 and k3;
    vars k1 and k1;
  enddef;
  def map between Vnc_CO2 and CO2c for
    vars Vnc_CO2 and Vnc_CO2;
  enddef;
  def map between Fout_t and Vv for
    vars Fout_t and Fout_t;
  enddef;
  def map between environment and PCrn for
    vars time and time;
  enddef;
  def map between Vg_pk and PYRg for
    vars Vg_pk and Vg_pk;
  enddef;
  def map between environment and LACn for
    vars time and time;
  enddef;
  def map between GLYg and Vg_glys for
    vars GLYg and GLYg;
  enddef;
  def map between GLCc and Vcg_GLC for
    vars GLCc and GLCc;
  enddef;
  def map between Vn_mito and O2n for
    vars Vn_mito and Vn_mito;
  enddef;
  def map between model_parameters and Veg_GLC for
    vars KO1 and KO1;
  enddef;
  def map between Vg_mito and NADHg for
    vars Vg_mito and Vg_mito;
  enddef;
  def map between ATPn and u_n for
    vars ATPn and ATPn;
  enddef;
  def map between ADPn and Vn_pgk for
    vars ADPn and ADPn;
  enddef;
  def map between Vn_leak_Na and NAn for
    vars Vn_leak_Na and Vn_leak_Na;
  enddef;
  def map between Vn_pgk and NADHn for
    vars Vn_pgk and Vn_pgk;
  enddef;
  def map between Fin_t and Vc_LAC for
    vars Fin_t and Fin_t;
  enddef;
  def map between environment and Fin_t for
    vars time and time;
  enddef;
  def map between Vn_ldh and PYRn for
    vars Vn_ldh and Vn_ldh;
  enddef;
  def map between ADPn and Vn_ck for
    vars ADPn and ADPn;
  enddef;
  def map between LACn and Vne_LAC for
    vars LACn and LACn;
  enddef;
  def map between ATPg and Vg_ck for
    vars ATPg and ATPg;
  enddef;
  def map between O2n and Vcn_O2 for
    vars O2n and O2n;
  enddef;
  def map between model_parameters and O2c for
    vars Rcg and Rcg;
    vars Rcn and Rcn;
  enddef;
  def map between Vn_pk and PYRn for
    vars Vn_pk and Vn_pk;
  enddef;
  def map between Vg_leak_Na and NAg for
    vars Vg_leak_Na and Vg_leak_Na;
  enddef;
  def map between CRn and Vn_ck for
    vars CRn and CRn;
  enddef;
  def map between Vg_pk and PEPg for
    vars Vg_pk and Vg_pk;
  enddef;
  def map between environment and G6Pn for
    vars time and time;
  enddef;
  def map between O2c and Vcn_O2 for
    vars O2c and O2c;
  enddef;
  def map between model_parameters and ATPn for
    vars nOP and nOP;
  enddef;
  def map between Vn_pgk and GAPn for
    vars Vn_pgk and Vn_pgk;
  enddef;
  def map between model_parameters and Vg_hk for
    vars aG6P_inh_hk and aG6P_inh_hk;
    vars Km_GLC and Km_GLC;
    vars G6P_inh_hk and G6P_inh_hk;
  enddef;
  def map between environment and ATPn for
    vars time and time;
  enddef;
  def map between Vg_pgk and GAPg for
    vars Vg_pgk and Vg_pgk;
  enddef;
  def map between dAMP_dATPn and ATPn for
    vars dAMP_dATPn and dAMP_dATPn;
  enddef;
  def map between ATPn and Vn_ATPase for
    vars ATPn and ATPn;
  enddef;
  def map between Vg_pfk and GAPg for
    vars Vg_pfk and Vg_pfk;
  enddef;
  def map between Vce_GLC and GLCc for
    vars Vce_GLC and Vce_GLC;
  enddef;
  def map between model_parameters and u_n for
    vars qak and qak;
    vars ATPtot and ATPtot;
  enddef;
  def map between CO2c and Vc_CO2 for
    vars CO2c and CO2c;
  enddef;
  def map between GAPg and Vg_pgk for
    vars GAPg and GAPg;
  enddef;
  def map between model_parameters and Vg_pgi for
    vars Km_G6P and Km_G6P;
    vars Km_F6P_pgi and Km_F6P_pgi;
  enddef;
  def map between LACc and Vc_LAC for
    vars LACc and LACc;
  enddef;
  def map between environment and O2c for
    vars time and time;
  enddef;
  def map between GLCc and Vce_GLC for
    vars GLCc and GLCc;
  enddef;
  def map between LACn and Vn_ldh for
    vars LACn and LACn;
  enddef;
  def map between LACg and Vgc_LAC for
    vars LACg and LACg;
  enddef;
  def map between ATPn and ADPn for
    vars ATPn and ATPn;
  enddef;
  def map between environment and ATPg for
    vars time and time;
  enddef;
  def map between Vn_pgi and F6Pn for
    vars Vn_pgi and Vn_pgi;
  enddef;
  def map between model_parameters and Vg_leak_Na for
    vars NAe and NAe;
    vars Vm and Vm;
    vars Sm_g and Sm_g;
    vars Vg and Vg;
    vars F and F;
    vars RT and RT;
  enddef;
  def map between LACc and Vgc_LAC for
    vars LACc and LACc;
  enddef;
  def map between environment and G6Pg for
    vars time and time;
  enddef;
  def map between u_g and dAMP_dATPg for
    vars u_g and u_g;
  enddef;
  def map between PYRg and Vg_ldh for
    vars PYRg and PYRg;
  enddef;
  def map between Vn_pk and PEPn for
    vars Vn_pk and Vn_pk;
  enddef;
  def map between environment and NADHn for
    vars time and time;
  enddef;
  def map between V_en_GLC and GLCn for
    vars V_en_GLC and V_en_GLC;
  enddef;
  def map between Vg_ldh and PYRg for
    vars Vg_ldh and Vg_ldh;
  enddef;
  def map between Veg_GLU and GLUg for
    vars Veg_GLU and Veg_GLU;
  enddef;
  def map between Vg_pump and NAg for
    vars Vg_pump and Vg_pump;
  enddef;
  def map between environment and GAPg for
    vars time and time;
  enddef;
  def map between Fout_t and dHb for
    vars Fout_t and Fout_t;
  enddef;
  def map between Fin_t and Vv for
    vars Fin_t and Fin_t;
  enddef;
  def map between environment and GLYg for
    vars time and time;
  enddef;
  def map between NADHg and Vg_ldh for
    vars NADHg and NADHg;
  enddef;
  def map between model_parameters and unitstepSB2 for
    vars tend and tend;
    vars to_GLY and to_GLY;
    vars tend_GLY and tend_GLY;
    vars to and to;
  enddef;
  def map between ADPg and Vg_ck for
    vars ADPg and ADPg;
  enddef;
  def map between LACg and Vge_LAC for
    vars LACg and LACg;
  enddef;
  def map between ATPg and AMPg for
    vars ATPg and ATPg;
  enddef;
  def map between NAn and Vn_pump for
    vars NAn and NAn;
  enddef;
  def map between Vn_pfk and F6Pn for
    vars Vn_pfk and Vn_pfk;
  enddef;
  def map between model_parameters and Fin_t for
    vars tend and tend;
    vars deltaf and deltaf;
    vars t1 and t1;
    vars stim and stim;
    vars sr and sr;
    vars to and to;
  enddef;
  def map between ATPn and Vn_pfk for
    vars ATPn and ATPn;
  enddef;
  def map between Vn_mito and Vnc_CO2 for
    vars Vn_mito and Vn_mito;
  enddef;
  def map between Vn_hk and ATPn for
    vars Vn_hk and Vn_hk;
  enddef;
  def map between Vgc_LAC and LACg for
    vars Vgc_LAC and Vgc_LAC;
  enddef;
  def map between Vcn_O2 and O2c for
    vars Vcn_O2 and Vcn_O2;
  enddef;
  def map between Vcg_GLC and GLCg for
    vars Vcg_GLC and Vcg_GLC;
  enddef;
  def map between Vn_ldh and NADHn for
    vars Vn_ldh and Vn_ldh;
  enddef;
  def map between GLCe and Veg_GLC for
    vars GLCe and GLCe;
  enddef;
  def map between Vn_pump and NAn for
    vars Vn_pump and Vn_pump;
  enddef;
  def map between NADg and Vg_pgk for
    vars NADg and NADg;
  enddef;
  def map between LACe and Vec_LAC for
    vars LACe and LACe;
  enddef;
  def map between environment and LACc for
    vars time and time;
  enddef;
  def map between Vc_LAC and LACc for
    vars Vc_LAC and Vc_LAC;
  enddef;
  def map between environment and F6Pg for
    vars time and time;
  enddef;
  def map between O2c and Vc_O2 for
    vars O2c and O2c;
  enddef;
  def map between Vn_pfk and GAPn for
    vars Vn_pfk and Vn_pfk;
  enddef;
  def map between Vg_glyp and G6Pg for
    vars Vg_glyp and Vg_glyp;
  enddef;
  def map between Vg_pgk and PEPg for
    vars Vg_pgk and Vg_pgk;
  enddef;
  def map between NADg and Vg_ldh for
    vars NADg and NADg;
  enddef;
  def map between Vg_glys and G6Pg for
    vars Vg_glys and Vg_glys;
  enddef;
  def map between environment and CO2c for
    vars time and time;
  enddef;
  def map between Vn_ldh and LACn for
    vars Vn_ldh and Vn_ldh;
  enddef;
  def map between environment and Vg_glyp for
    vars time and time;
  enddef;
  def map between ADPn and AMPn for
    vars ADPn and ADPn;
  enddef;
  def map between ADPg and Vg_mito for
    vars ADPg and ADPg;
  enddef;
  def map between model_parameters and Vn_pfk for
    vars Ki_ATP and Ki_ATP;
    vars nH and nH;
    vars Km_F6P_pfk and Km_F6P_pfk;
  enddef;
  def map between model_parameters and Vn_mito for
    vars Km_PYR and Km_PYR;
    vars rATP_mito and rATP_mito;
    vars Km_ADP and Km_ADP;
    vars Km_O2 and Km_O2;
    vars aATP_mito and aATP_mito;
  enddef;
  def map between GLCn and Vn_hk for
    vars GLCn and GLCn;
  enddef;
  def map between ADPg and Vg_pgk for
    vars ADPg and ADPg;
  enddef;
  def map between Vcg_O2 and O2c for
    vars Vcg_O2 and Vcg_O2;
  enddef;
  def map between ATPg and Vg_pump for
    vars ATPg and ATPg;
  enddef;
  def map between Vec_LAC and LACc for
    vars Vec_LAC and Vec_LAC;
  enddef;
  def map between model_parameters and ATPg for
    vars nOP and nOP;
  enddef;
  def map between LACe and Vne_LAC for
    vars LACe and LACe;
  enddef;
  def map between Vg_gs and GLUn for
    vars Vg_gs and Vg_gs;
  enddef;
  def map between GAPn and Vn_pgk for
    vars GAPn and GAPn;
  enddef;
  def map between ATPg and Vg_mito for
    vars ATPg and ATPg;
  enddef;
  def map between Vne_LAC and LACn for
    vars Vne_LAC and Vne_LAC;
  enddef;
  def map between Vg_pgi and F6Pg for
    vars Vg_pgi and Vg_pgi;
  enddef;
  def map between Vg_pgk and NADHg for
    vars Vg_pgk and Vg_pgk;
  enddef;
  def map between O2c and dHb for
    vars O2c and O2c;
  enddef;
  def map between model_parameters and Vg_pfk for
    vars Ki_ATP and Ki_ATP;
    vars nH and nH;
    vars Km_F6P_pfk and Km_F6P_pfk;
  enddef;
  def map between Vg_pfk and ATPg for
    vars Vg_pfk and Vg_pfk;
  enddef;
  def map between Vge_LAC and LACe for
    vars Vge_LAC and Vge_LAC;
  enddef;
  def map between ATPg and Vg_pfk for
    vars ATPg and ATPg;
  enddef;
  def map between u_n and dAMP_dATPn for
    vars u_n and u_n;
  enddef;
  def map between Vn_mito and ATPn for
    vars Vn_mito and Vn_mito;
  enddef;
  def map between model_parameters and Vn_leak_Na for
    vars NAe and NAe;
    vars Vm and Vm;
    vars Vn and Vn;
    vars Sm_n and Sm_n;
    vars F and F;
    vars RT and RT;
  enddef;
  def map between environment and unitstepSB2 for
    vars time and time;
  enddef;
  def map between GLUn and Vn_stim_GLU for
    vars GLUn and GLUn;
  enddef;
  def map between G6Pn and Vn_hk for
    vars G6Pn and G6Pn;
  enddef;
  def map between model_parameters and unitstepSB for
    vars tend and tend;
    vars to and to;
  enddef;
  def map between environment and LACg for
    vars time and time;
  enddef;
  def map between Fin_t and Vc_O2 for
    vars Fin_t and Fin_t;
  enddef;
  def map between environment and PEPg for
    vars time and time;
  enddef;
  def map between Vn_pgk and ATPn for
    vars Vn_pgk and Vn_pgk;
  enddef;
  def map between ATPg and dAMP_dATPg for
    vars ATPg and ATPg;
  enddef;
  def map between model_parameters and Vn_pgi for
    vars Km_G6P and Km_G6P;
    vars Km_F6P_pgi and Km_F6P_pgi;
  enddef;
  def map between ATPn and dAMP_dATPn for
    vars ATPn and ATPn;
  enddef;
  def map between environment and unitstepSB for
    vars time and time;
  enddef;
  def map between G6Pg and Vg_glys for
    vars G6Pg and G6Pg;
  enddef;
  def map between CRg and Vg_ck for
    vars CRg and CRg;
  enddef;
  def map between Vn_pk and ATPn for
    vars Vn_pk and Vn_pk;
  enddef;
  def map between model_parameters and Vcn_O2 for
    vars Ko2 and Ko2;
    vars Vn and Vn;
    vars HbOP and HbOP;
  enddef;
  def map between Vg_mito and Vgc_CO2 for
    vars Vg_mito and Vg_mito;
  enddef;
  def map between Veg_GLU and NAg for
    vars Veg_GLU and Veg_GLU;
  enddef;
  def map between model_parameters and GLCe for
    vars Reg and Reg;
    vars Ren and Ren;
  enddef;
  def map between F6Pg and Vg_pgi for
    vars F6Pg and F6Pg;
  enddef;
  def map between v_stim and Vn_stim for
    vars v_stim and v_stim;
  enddef;
  def map between environment and NAn for
    vars time and time;
  enddef;
  def map between ATPn and Vn_pump for
    vars ATPn and ATPn;
  enddef;
  def map between unitstepSB2 and Vg_glyp for
    vars unitstepSB2 and unitstepSB2;
  enddef;
  def map between GLCg and Vcg_GLC for
    vars GLCg and GLCg;
  enddef;
  def map between Vg_gs and GLUg for
    vars Vg_gs and Vg_gs;
  enddef;
  def map between GLCn and V_en_GLC for
    vars GLCn and GLCn;
  enddef;
  def map between G6Pg and Vg_pgi for
    vars G6Pg and G6Pg;
  enddef;
  def map between LACg and Vg_ldh for
    vars LACg and LACg;
  enddef;
  def map between environment and O2g for
    vars time and time;
  enddef;
  def map between PEPg and Vg_pk for
    vars PEPg and PEPg;
  enddef;
  def map between Vne_LAC and LACe for
    vars Vne_LAC and Vne_LAC;
  enddef;
  def map between model_parameters and AMPg for
    vars ATPtot and ATPtot;
  enddef;
  def map between model_parameters and u_g for
    vars qak and qak;
    vars ATPtot and ATPtot;
  enddef;
  def map between environment and GLCe for
    vars time and time;
  enddef;
  def map between model_parameters and O2g for
    vars NAero and NAero;
  enddef;
  def map between Vg_gs and ATPg for
    vars Vg_gs and Vg_gs;
  enddef;
  def map between ADPg and AMPg for
    vars ADPg and ADPg;
  enddef;
  def map between model_parameters and Vn_stim_GLU for
    vars KO2 and KO2;
    vars Km_GLU and Km_GLU;
    vars R_GLU_NA and R_GLU_NA;
  enddef;
  def map between NADHn and NADn for
    vars NADHn and NADHn;
  enddef;
  def map between environment and LACe for
    vars time and time;
  enddef;
  def map between O2g and Vg_mito for
    vars O2g and O2g;
  enddef;
  def map between model_parameters and Vg_glyp for
    vars t1 and t1;
    vars to_GLY and to_GLY;
    vars stim and stim;
    vars delta_GLY and delta_GLY;
    vars tend_GLY and tend_GLY;
    vars KO3 and KO3;
    vars to and to;
    vars sr_GLY and sr_GLY;
  enddef;
  def map between Vn_mito and PYRn for
    vars Vn_mito and Vn_mito;
  enddef;
  def map between Vn_ATPase and ATPn for
    vars Vn_ATPase and Vn_ATPase;
  enddef;
  def map between dAMP_dATPg and ATPg for
    vars dAMP_dATPg and dAMP_dATPg;
  enddef;
  def map between Vcn_O2 and O2n for
    vars Vcn_O2 and Vcn_O2;
  enddef;
  def map between Vge_LAC and LACg for
    vars Vge_LAC and Vge_LAC;
  enddef;
  def map between ATPg and Vg_gs for
    vars ATPg and ATPg;
  enddef;
  def map between model_parameters and dAMP_dATPn for
    vars qak and qak;
    vars ATPtot and ATPtot;
  enddef;
  def map between GLCc and Vc_GLC for
    vars GLCc and GLCc;
  enddef;
  def map between model_parameters and Vc_LAC for
    vars Vc and Vc;
    vars LACa and LACa;
  enddef;
  def map between Vn_pump and ATPn for
    vars Vn_pump and Vn_pump;
  enddef;
  def map between Vg_ATPase and ATPg for
    vars Vg_ATPase and Vg_ATPase;
  enddef;
  def map between Vce_GLC and GLCe for
    vars Vce_GLC and Vce_GLC;
  enddef;
  def map between model_parameters and Vc_GLC for
    vars Vc and Vc;
    vars GLCa and GLCa;
  enddef;
  def map between O2n and Vn_mito for
    vars O2n and O2n;
  enddef;
  def map between Vn_mito and NADHn for
    vars Vn_mito and Vn_mito;
  enddef;
  def map between Vn_pfk and ATPn for
    vars Vn_pfk and Vn_pfk;
  enddef;
  def map between model_parameters and GLCc for
    vars Rcg and Rcg;
    vars Rce and Rce;
  enddef;
  def map between GLYg and Vg_glyp for
    vars GLYg and GLYg;
  enddef;
  def map between PEPn and Vn_pk for
    vars PEPn and PEPn;
  enddef;
  def map between environment and PEPn for
    vars time and time;
  enddef;
  def map between model_parameters and AMPn for
    vars ATPtot and ATPtot;
  enddef;
  def map between environment and GLUn for
    vars time and time;
  enddef;
  def map between PCrn and Vn_ck for
    vars PCrn and PCrn;
  enddef;
  def map between ATPg and Vg_hk for
    vars ATPg and ATPg;
  enddef;
  def map between Vc_O2 and O2c for
    vars Vc_O2 and Vc_O2;
  enddef;
  def map between Vcg_O2 and O2g for
    vars Vcg_O2 and Vcg_O2;
  enddef;
  def map between Vg_mito and PYRg for
    vars Vg_mito and Vg_mito;
  enddef;
  def map between Vc_CO2 and CO2c for
    vars Vc_CO2 and Vc_CO2;
  enddef;
  def map between NADn and Vn_ldh for
    vars NADn and NADn;
  enddef;
  def map between environment and GAPn for
    vars time and time;
  enddef;
  def map between O2g and Vcg_O2 for
    vars O2g and O2g;
  enddef;
  def map between O2c and Vcg_O2 for
    vars O2c and O2c;
  enddef;
  def map between Veg_GLC and GLCe for
    vars Veg_GLC and Veg_GLC;
  enddef;
  def map between Vn_ck and PCrn for
    vars Vn_ck and Vn_ck;
  enddef;
  def map between Vn_stim_GLU and GLUe for
    vars Vn_stim_GLU and Vn_stim_GLU;
  enddef;
  def map between ATPn and AMPn for
    vars ATPn and ATPn;
  enddef;
  def map between model_parameters and v_stim for
    vars tend and tend;
    vars v1_n and v1_n;
    vars v2_n and v2_n;
    vars stim and stim;
    vars t_n_stim and t_n_stim;
    vars to and to;
  enddef;
  def map between model_parameters and dAMP_dATPg for
    vars qak and qak;
    vars ATPtot and ATPtot;
  enddef;
  def map between NAn and Vn_leak_Na for
    vars NAn and NAn;
  enddef;
  def map between Vgc_LAC and LACc for
    vars Vgc_LAC and Vgc_LAC;
  enddef;
  def map between G6Pg and Vg_hk for
    vars G6Pg and G6Pg;
  enddef;
  def map between Vv and BOLD for
    vars Vv and Vv;
  enddef;
  def map between Vgc_CO2 and CO2c for
    vars Vgc_CO2 and Vgc_CO2;
  enddef;
  def map between Vn_hk and G6Pn for
    vars Vn_hk and Vn_hk;
  enddef;
  def map between PCrg and Vg_ck for
    vars PCrg and PCrg;
  enddef;
  def map between Veg_GLU and GLUe for
    vars Veg_GLU and Veg_GLU;
  enddef;
  def map between NADHn and Vn_ldh for
    vars NADHn and NADHn;
  enddef;
  def map between NADHg and Vg_pgk for
    vars NADHg and NADHg;
  enddef;
  def map between Vg_pgk and ATPg for
    vars Vg_pgk and Vg_pgk;
  enddef;
  def map between GLCg and Vg_hk for
    vars GLCg and GLCg;
  enddef;
  def map between environment and GLCc for
    vars time and time;
  enddef;
  def map between model_parameters and GLUe for
    vars Reg and Reg;
    vars Ren and Ren;
  enddef;
  def map between model_parameters and Vn_pump for
    vars Km_pump and Km_pump;
    vars kpump and kpump;
    vars Vn and Vn;
    vars Sm_n and Sm_n;
  enddef;
  def map between G6Pn and Vn_pgi for
    vars G6Pn and G6Pn;
  enddef;
  def map between environment and GLCn for
    vars time and time;
  enddef;
  def map between model_parameters and Vc_O2 for
    vars O2a and O2a;
    vars Vc and Vc;
  enddef;
  def map between Vn_ck and ATPn for
    vars Vn_ck and Vn_ck;
  enddef;
  def map between environment and F6Pn for
    vars time and time;
  enddef;
  def map between NADHg and NADg for
    vars NADHg and NADHg;
  enddef;
  def map between F6Pn and Vn_pgi for
    vars F6Pn and F6Pn;
  enddef;
  def map between ATPg and Vg_ATPase for
    vars ATPg and ATPg;
  enddef;
  def map between Vg_glys and GLYg for
    vars Vg_glys and Vg_glys;
  enddef;
  def map between environment and PYRg for
    vars time and time;
  enddef;
  def map between V_en_GLC and GLCe for
    vars V_en_GLC and V_en_GLC;
  enddef;
  def map between Vg_ldh and LACg for
    vars Vg_ldh and Vg_ldh;
  enddef;
  def map between model_parameters and dHb for
    vars O2a and O2a;
  enddef;
  def map between environment and NAg for
    vars time and time;
  enddef;
  def map between Fin_t and dHb for
    vars Fin_t and Fin_t;
  enddef;
  def map between Vg_pump and ATPg for
    vars Vg_pump and Vg_pump;
  enddef;
  def map between Vg_glyp and GLYg for
    vars Vg_glyp and Vg_glyp;
  enddef;
  def map between F6Pg and Vg_pfk for
    vars F6Pg and F6Pg;
  enddef;
  def map between model_parameters and Fout_t for
    vars Vv0 and Vv0;
    vars CBF0 and CBF0;
    vars tv and tv;
  enddef;
  def map between NAg and Vg_pump for
    vars NAg and NAg;
  enddef;
  def map between Vn_stim and NAn for
    vars Vn_stim and Vn_stim;
  enddef;
  def map between model_parameters and Vg_glys for
    vars aGLY_inh and aGLY_inh;
    vars GLY_inh and GLY_inh;
  enddef;
  def map between NADHn and Vn_pgk for
    vars NADHn and NADHn;
  enddef;
  def map between Vg_ck and PCrg for
    vars Vg_ck and Vg_ck;
  enddef;
  def map between ADPg and Vg_pk for
    vars ADPg and ADPg;
  enddef;
  def map between model_parameters and Vc_CO2 for
    vars Vc and Vc;
    vars CO2a and CO2a;
  enddef;
  def map between Vn_hk and GLCn for
    vars Vn_hk and Vn_hk;
  enddef;
  def map between environment and Vv for
    vars time and time;
  enddef;
  def map between ATPn and Vn_hk for
    vars ATPn and ATPn;
  enddef;
  def map between GLUg and Vg_gs for
    vars GLUg and GLUg;
  enddef;
  def map between environment and NADHg for
    vars time and time;
  enddef;
  def map between Vec_LAC and LACe for
    vars Vec_LAC and Vec_LAC;
  enddef;
  def map between PCrg and CRg for
    vars PCrg and PCrg;
  enddef;
  def map between Vn_stim and Vn_stim_GLU for
    vars Vn_stim and Vn_stim;
  enddef;
  def map between GLCe and Vce_GLC for
    vars GLCe and GLCe;
  enddef;
  def map between Vg_mito and O2g for
    vars Vg_mito and Vg_mito;
  enddef;
  def map between Fin_t and Fout_t for
    vars Fin_t and Fin_t;
  enddef;
  def map between Fin_t and Vc_GLC for
    vars Fin_t and Fin_t;
  enddef;
  def map between PYRg and Vg_mito for
    vars PYRg and PYRg;
  enddef;
  def map between Vn_stim_GLU and GLUn for
    vars Vn_stim_GLU and Vn_stim_GLU;
  enddef;
  def map between Vn_pgi and G6Pn for
    vars Vn_pgi and Vn_pgi;
  enddef;
  def map between environment and GLUe for
    vars time and time;
  enddef;
  def map between PYRn and Vn_mito for
    vars PYRn and PYRn;
  enddef;
  def map between ATPn and Vn_mito for
    vars ATPn and ATPn;
  enddef;
  def map between model_parameters and Vg_pump for
    vars Sm_g and Sm_g;
    vars Km_pump and Km_pump;
    vars kpump and kpump;
    vars Vg and Vg;
  enddef;
  def map between F6Pn and Vn_pfk for
    vars F6Pn and F6Pn;
  enddef;
  def map between environment and v_stim for
    vars time and time;
  enddef;
  def map between environment and GLCg for
    vars time and time;
  enddef;
  def map between dHb and BOLD for
    vars dHb and dHb;
  enddef;
  def map between Vg_pgi and G6Pg for
    vars Vg_pgi and Vg_pgi;
  enddef;
  def map between GLCe and V_en_GLC for
    vars GLCe and GLCe;
  enddef;
  def map between LACe and Vge_LAC for
    vars LACe and LACe;
  enddef;
  def map between ATPn and Vn_ck for
    vars ATPn and ATPn;
  enddef;
  def map between model_parameters and Vn_hk for
    vars aG6P_inh_hk and aG6P_inh_hk;
    vars Km_GLC and Km_GLC;
    vars G6P_inh_hk and G6P_inh_hk;
  enddef;
enddef;
