// creator: Other May; Given Catherine; Family Lloyd; Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz
// comment: FN Catherine Lloyd; This CellML model has been coded by translating the authors original XPPAUT .ode file, which can be found at http://www.math.fsu.edu/~bertram/software/islet/BJ_07/mitophan.ode . The model runs in PCEnv and is able to produce the published results. The parameters have been chosen to recreate the bursting behaviour seen in figures 3 and 4 of the original paper.
// publisher: The University of Auckland, Bioengineering Institute
// created: W3CDTF 2007-08-08T00:00:00+00:00
// modification: Updated curation status; W3CDTF 2009-05-15T16:19:11+12:00; Other Richard; Given James; Family Lawson
// modification: Model has been fixed such that it now recreates the published results. This required a slight deviation from the equations in the published paper and the author's original .ODE code was used instead.; W3CDTF 2007-11-01T17:17:08+13:00; Other May; Given Catherine; Family Lloyd
// modelName bertram_2007
// isDescribedBy 17172305
// unknown: Bertram et al.'s 2007 mathematical model of the interaction between glycolysis and mitochondrial respiration in metabolic oscillations of pancreatic islets.@en
// modelName: bertram_satin_pedersen_luciani_sherman_2007
// reference: title Intra- and inter-islet synchronization of metabolically driven insulin secretion; volume 92; Given Richard; Family Bertram; Other S; Given Leslie; Family Satin; Other Gram; Given Morten; Family Pedersen; Other S; Given Dan; Family Luciani; Given Arthur; Family Sherman; title Biophysical Journal; first_page 1544; W3CDTF 2007-03-01; last_page 1555; Pubmed_id 17172305
// reference: insulin; pancreatic beta cell; glycolysis; endocrine; mitochondria; metabolism; subject_type keyword
// title: Bertram et al.'s 2007 mathematical model of the interaction between glycolysis and mitochondrial respiration in metabolic oscillations of pancreatic islets.
// comment: FN Catherine Lloyd; This is a CellML description of Bertram et al.'s 2007 mathematical model of the interaction between glycolysis and mitochondrial respiration in metabolic oscillations of pancreatic islets.
// simulation: nonstandard-pointDensity 100000; endingValue 600000; maximumStepSize 10
def model bertram_satin_pedersen_luciani_sherman_2007 as
  // Interaction of glycolysis and mitochondrial respiration in metabolic oscillations of pancreatic islets
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model has been coded by translating the authors original XPPAUT.ode file, which can be found at http://www.math.fsu.edu/~bertram/software/islet/BJ_07/mitophan.ode. The model runs in PCEnv in COR and is able to produce the published results. The parameters have been chosen to recreate the bursting behaviour seen in figures 3 and 4 of the original paper. Some equations have inconsistent magnitudes due to the fact that some units are defined in milliseconds whereas others are defined in seconds.
  //
  // Model Structure
  //
  // Glucose metabolism plays a key signalling role in insulin-secreting pancreatic beta cells. In addition to generating ATP - the ubiquitous form of energy used to fuel many cellular processes - glucose metabolism in pancreatic beta cells is also the means by which blood glucose levels are monitored, ensuring an appropriate level of insulin secretion. ATP-sensitive potassium channels in the plasma membrane are activated by ADP and are inactivated by ATP, therefore a high ATP/ADP ratio results in a reduced number of open, ATP-sensitive, potassium channels. In turn, this results in membrane depolarisation and voltage-sensitive calcium channels open. The resulting influx of calcium ions into the cell cytosol induces insulin secretion, which in a healthy individual typically occurs in oscillatory waves. These can be fast with an oscillatory period of less than a minute, or slow with a duration of 2 to 7 minutes, or they can be a combination of fast and slow waves. This oscillatory pattern of insulin secretion appears to have a physiological function which is of particular interest since it is lost in patients with type II diabetes.
  //
  // Although the definitive mechanisms underlying these insulin oscillations are unknown, in the paper described here, Richard Bertram et al. suggest that calcium feedback onto ATP production or consumption is responsible for the fast component of the insulin oscillations, while oscillations in the glycolytic pathway are responsible for the slow component. Furthermore, they build these phenomena into a mathematical model that combines a model of mitochondrial metabolism with models of glycolytic oscillations, plasma membrane electrical activity, and calcium handling in the cytosol and endoplasmic reticulum (summarised in the figure below).
  //
  // model diagram
  //
  // Schematic diagram of the model components and the variables which are exchanged between the components.
  //
  // The original paper reference is cited below:
  //
  // Interaction of glycolysis and mitochondrial respiration in metabolic oscillations of pancreatic islets, Richard Bertram, Leslie S. Satin, Morten Gram Pedersen, Dan S. Luciani, and Arthur Sherman, 2007, Biophysical Journal , 92, 1544-1555. PubMed ID: 17172305 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=17172305&query_hl=1&itool=pubmed_docsum)
  //
  // The authors highlight that the original model code can be downloaded here (http://www.math.fsu.edu/~bertram/software/islet/BJ_07/mitophan.ode) .
  def unit second_order_rate_constant as
    unit micromolar {expo: -1.0};
    unit millisecond {expo: -1.0};
  enddef;
  def unit femtoampere as
    unit ampere {pref: femto};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1.0};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1.0};
  enddef;
  def unit micromolar_millisecond_femtoampere as
    unit micromolar;
    unit millisecond {expo: -1.0};
    unit ampere {expo: -1.0, pref: pico};
  enddef;
  def unit micromolar_second as
    unit second {expo: -1.0};
    unit micromolar;
  enddef;
  def unit millimolar as
    unit litre {expo: -1.0};
    unit mole {pref: milli};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_micromolar as
    unit micromolar {expo: -1.0};
  enddef;
  def unit micromolar_millisecond as
    unit micromolar;
    unit millisecond {expo: -1.0};
  enddef;
  def unit per_micromolar_millisecond_millivolt as
    unit millisecond {expo: -1.0};
    unit millivolt {expo: -1.0};
    unit micromolar {expo: -1.0};
  enddef;
  def unit picosiemens as
    unit siemens {pref: pico};
  enddef;
  def unit minute as
    unit second {mult: 60.0};
  enddef;
  def unit micromolar_millivolt as
    unit micromolar;
    unit millivolt {expo: -1.0};
  enddef;
  def unit first_order_rate_constant as
    unit millisecond {expo: -1.0};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit femtofarad as
    unit farad {pref: femto};
  enddef;
  def unit micromolar_millisecond_millivolt as
    unit millisecond {expo: -1.0};
    unit micromolar;
    unit millivolt {expo: -1.0};
  enddef;
  def unit millimolar_millisecond as
    unit millimolar;
    unit millisecond {expo: -1.0};
  enddef;

  def comp environment as
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    // isComputationalComponentFor: #property_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Vm: millivolt {init: -60.0, pub: out};
    var cm: femtofarad {init: 5300.0};
    // isComputationalComponentFor: #property_1; physicalPropertyOf #process_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    var Ica: femtoampere {pub: in};
    // isComputationalComponentFor: #property_2; #process_1; #mediator_1; #entity_8; hasPhysicalDefinition http://identifiers.org/go/GO:0008076; #sink_3; hasMultiplier 1.0; #entity_6; #entity_1; #entity_2; hasPhysicalDefinition http://identifiers.org/fma/FMA:85704; name Electrical/Calcium compartment; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29103; #sink_2; hasMultiplier 1.0; #entity_7; #entity_4; part_of #entity_2; hasPhysicalDefinition http://identifiers.org/go/GO:0005739; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29103; #source_3; hasMultiplier 1.0; hasPhysicalEntityReference #entity_7; #source_2; hasMultiplier 1.0; hasPhysicalEntityReference #entity_6; name Voltage gated delayed rectifier potassium current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    var Ik: femtoampere {pub: in};
    // isComputationalComponentFor: #property_3; #process_2; #mediator_2; #entity_11; hasPhysicalDefinition https://identifiers.org/uniprot/Q62976; #source_4; hasMultiplier 1.0; #entity_9; #entity_10; name Electrical/Calcium compartment; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29103; name Calcium-activated K+ current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Calcium activated K+ current (K+ is activated by cystolic Ca2+).
    var Ikca: femtoampere {pub: in};
    // isComputationalComponentFor: #property_4; physicalPropertyOf #process_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: ATP-sensitive potassium current in electrical/calcium compartment of the pancreatic beta cell
    var Ikatp: femtoampere {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in};
    ode(Vm, time) = -(Ik+Ica+Ikca+Ikatp)/cm;
  enddef;

  // title: Ik
  // alternative: voltage-dependent potassium current
  def comp Ik as
    // isComputationalComponentFor: #property_5; physicalPropertyOf #process_1; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    var Ik: femtoampere {pub: out};
    var gK: picosiemens {init: 2700.0};
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in, priv: out};
    var VK: millivolt {pub: in};
    // isComputationalComponentFor: #property_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Vm: millivolt {pub: in, priv: out};
    var n: dimensionless {priv: in};
    Ik = gK*n*(Vm-VK);
  enddef;

  // title: n
  // alternative: voltage-dependent potassium current n gate
  def comp n as
    var n: dimensionless {init: 0.0, pub: out};
    var n_infinity: dimensionless;
    var tau_n: millisecond {init: 20.0};
    var vn: millivolt {init: -16.0};
    var sn: millivolt {init: 5.0};
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in};
    // isComputationalComponentFor: #property_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Vm: millivolt {pub: in};
    ode(n, time) = (n_infinity-n)/tau_n;
    n_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((vn-Vm)/sn));
  enddef;

  // title: Ica
  // alternative: voltage-dependent calcium current
  def comp Ica as
    // isComputationalComponentFor: #property_8; physicalPropertyOf #process_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    var Ica: femtoampere {pub: out};
    var gCa: picosiemens {init: 1000.0};
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in};
    var VCa: millivolt {pub: in};
    // isComputationalComponentFor: #property_9; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Vm: millivolt {pub: in, priv: out};
    var m_infinity: dimensionless {priv: in};
    Ica = gCa*m_infinity*(Vm-VCa);
  enddef;

  // title: m
  // alternative: voltage-dependent calcium current m gate
  def comp m as
    var m_infinity: dimensionless {pub: out};
    var v: millivolt {init: -20.0};
    var sm: millivolt {init: 12.0};
    // isComputationalComponentFor: #property_10; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Vm: millivolt {pub: in};
    m_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((v-Vm)/sm));
  enddef;

  // title: Ikca
  // alternative: calcium-activated potassium current
  def comp Ikca as
    // isComputationalComponentFor: #property_11; physicalPropertyOf #process_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Calcium activated K+ current (K+ is activated by cystolic Ca2+).
    var Ikca: femtoampere {pub: out};
    var gkCa: picosiemens {init: 300.0};
    var kd: micromolar {init: 0.5};
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in};
    var VK: millivolt {pub: in};
    // isComputationalComponentFor: #property_12; physicalPropertyOf #entity_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var c: micromolar {pub: in};
    // isComputationalComponentFor: #property_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Vm: millivolt {pub: in};
    Ikca = gkCa/(1.0{dimensionless}+sqr(kd/c))*(Vm-VK);
  enddef;

  // title: Ikatp
  // alternative: ATP-sensitive potassium current
  def comp Ikatp as
    // isComputationalComponentFor: #property_14; #process_3; #mediator_3; #entity_12; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:64338; #source_5; hasMultiplier 1.0; hasPhysicalEntityReference #entity_9; name ATP-sensitive K+ current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: ATP-sensitive potassium current in electrical/calcium compartment of the pancreatic beta cell
    var Ikatp: femtoampere {pub: out};
    var gkATP_: picosiemens {init: 16000.0};
    var katpo: dimensionless;
    var topo: dimensionless;
    var bottomo: dimensionless;
    // isComputationalComponentFor: #property_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var mgadp: micromolar;
    // isComputationalComponentFor: #property_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var adp3m: micromolar;
    // isComputationalComponentFor: #property_17; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var atp4m: micromolar;
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in};
    var VK: millivolt {pub: in};
    // isComputationalComponentFor: #property_18; physicalPropertyOf #entity_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var atp: micromolar {pub: in};
    // isComputationalComponentFor: #property_19; physicalPropertyOf #entity_17; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var adp: micromolar {pub: in};
    // isComputationalComponentFor: #property_20; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Vm: millivolt {pub: in};
    Ikatp = gkATP_*katpo*(Vm-VK);
    katpo = topo/bottomo;
    topo = 0.08{dimensionless}*(1.0{dimensionless}+2.0{dimensionless}*mgadp/17.0{micromolar})+0.89{dimensionless}*sqr(mgadp/17.0{micromolar});
    bottomo = sqr(1.0{dimensionless}+mgadp/17.0{micromolar})*(1.0{dimensionless}+adp3m/26.0{micromolar}+atp4m/1.0{micromolar});
    mgadp = 0.165{dimensionless}*adp;
    adp3m = 0.135{dimensionless}*adp;
    atp4m = 0.05{dimensionless}*atp;
  enddef;

  // title: JGPDH
  // alternative: rate of the glyceride 3-P dehydrogenase reaction
  def comp JGPDH as
    // isComputationalComponentFor: #property_21; physicalPropertyOf #process_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var JGPDH: micromolar_millisecond {pub: out};
    var kGPDH: micromolar_millisecond {init: 0.0005};
    // isComputationalComponentFor: #property_22; #entity_22; part_of #entity_14; hasPhysicalDefinition https://identifiers.org/uniprot/Q9QXD6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var FBP: micromolar {pub: in};
    JGPDH = kGPDH*sqrt(abs(FBP/1{micromolar}));
  enddef;

  // title: G6P
  // alternative: glucose 6-phosphate
  def comp G6P as
    // isComputationalComponentFor: #property_23; #entity_23; part_of #entity_14; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:21008; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var G6P: micromolar {init: 301.0, pub: out};
    var JGK_ms: micromolar_millisecond {pub: in};
    var JPFK_ms: micromolar_millisecond {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in};
    ode(G6P, time) = JGK_ms-JPFK_ms;
  enddef;

  // title: FBP
  // alternative: fructose 1-6-bisphosphate
  def comp FBP as
    // isComputationalComponentFor: #property_24; physicalPropertyOf #entity_22; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var FBP: micromolar {init: 2.16, pub: out};
    var JPFK_ms: micromolar_millisecond {pub: in};
    // isComputationalComponentFor: #property_25; physicalPropertyOf #process_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var JGPDH: micromolar_millisecond {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in};
    ode(FBP, time) = JPFK_ms-0.5{dimensionless}*JGPDH;
  enddef;

  // title: F6P
  // alternative: fructose 6-phosphate
  def comp F6P as
    // isComputationalComponentFor: #property_26; physicalPropertyOf #entity_24; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var F6P: micromolar {pub: out};
    // isComputationalComponentFor: #property_27; physicalPropertyOf #entity_23; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var G6P: micromolar {pub: in};
    F6P = 0.3{dimensionless}*G6P;
  enddef;

  // title: JPFK
  // alternative: rate of the phosphofructokinase reaction
  def comp JPFK as
    // isComputationalComponentFor: #property_28; #process_5; #source_7; hasMultiplier 1.0; #entity_26; part_of #entity_19; hasPhysicalDefinition http://identifiers.org/go/GO:0008443; name Phosphofructokinase reaction rate in the glycolyticcompartment; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var JPFK: micromolar_second {pub: out};
    var JPFK_ms: micromolar_millisecond {pub: out};
    var bottom1: dimensionless {init: 1};
    var topa1: dimensionless {init: 0};
    var k1: micromolar {init: 30};
    var k2: micromolar {init: 1};
    var k3: micromolar {init: 50000};
    var k4: micromolar {init: 1000};
    var VmaxPFK: micromolar_millisecond {init: 5.0};
    // isComputationalComponentFor: #property_29; physicalPropertyOf #entity_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var atp: micromolar {pub: in};
    var weight2: dimensionless;
    var topa2: dimensionless;
    var bottom2: dimensionless;
    // isComputationalComponentFor: #property_30; #entity_24; #entity_25; part_of #entity_14; name Glycolytic compartment; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:88003; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var F6P: micromolar {pub: in};
    var topa3: dimensionless;
    var weight3: dimensionless;
    var bottom3: dimensionless;
    var f13: dimensionless {init: 0.02};
    var f43: dimensionless {init: 20};
    var f23: dimensionless {init: 0.2};
    var f42: dimensionless {init: 20};
    var f41: dimensionless {init: 20};
    var weight4: dimensionless;
    var topa4: dimensionless;
    var bottom4: dimensionless;
    var weight5: dimensionless;
    var topa5: dimensionless;
    var bottom5: dimensionless;
    var weight6: dimensionless;
    var topa6: dimensionless;
    var bottom6: dimensionless;
    var weight7: dimensionless;
    var topa7: dimensionless;
    var bottom7: dimensionless;
    var weight8: dimensionless;
    var topa8: dimensionless;
    var bottom8: dimensionless;
    var weight9: dimensionless;
    var topa9: dimensionless;
    var bottom9: dimensionless;
    var weight10: dimensionless;
    var topa10: dimensionless;
    var bottom10: dimensionless;
    var weight11: dimensionless;
    var topa11: dimensionless;
    var bottom11: dimensionless;
    var weight12: dimensionless;
    var topa12: dimensionless;
    var bottom12: dimensionless;
    var weight13: dimensionless;
    var topa13: dimensionless;
    var bottom13: dimensionless;
    var weight14: dimensionless;
    var topa14: dimensionless;
    var bottom14: dimensionless;
    var weight15: dimensionless;
    var topa15: dimensionless;
    var bottom15: dimensionless;
    var weight16: dimensionless;
    var topa16: dimensionless;
    var bottom16: dimensionless;
    var topb: dimensionless;
    // isComputationalComponentFor: #property_31; physicalPropertyOf #entity_22; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var FBP: micromolar {pub: in};
    var AMP: micromolar {pub: in};
    var lambda: dimensionless {init: 0.06};
    var kappa: dimensionless {pub: in};
    JPFK_ms = kappa*JPFK;
    JPFK = (lambda*VmaxPFK*topa16+VmaxPFK*topb)/bottom16;
    weight2 = sqr(atp)/(k4*1{micromolar});
    topa2 = topa1;
    bottom2 = bottom1+weight2;
    weight3 = sqr(F6P)/(k3*1{micromolar});
    topa3 = topa2+weight3;
    bottom3 = bottom2+weight3;
    weight4 = sqr(F6P*atp)/(f43*k3*k4*sqr(1{micromolar}));
    topa4 = topa3+weight4;
    bottom4 = bottom3+weight4;
    weight5 = FBP/k2;
    topa5 = topa4;
    bottom5 = bottom4+weight5;
    weight6 = FBP*sqr(atp)/(k2*k4*f42*1{micromolar});
    topa6 = topa5;
    bottom6 = bottom5+weight6;
    weight7 = FBP*sqr(F6P)/(k2*k3*f23*1{micromolar});
    topa7 = topa6+weight7;
    bottom7 = bottom6+weight7;
    weight8 = FBP*sqr(F6P)*sqr(atp)/(k2*k3*k4*f23*f42*f43*sqr(1{micromolar}));
    topa8 = topa7+weight8;
    bottom8 = bottom7+weight8;
    weight9 = AMP/k1;
    topa9 = topa8;
    bottom9 = bottom8+weight9;
    weight10 = AMP*sqr(atp)/(k1*k4*f41*1{micromolar});
    topa10 = topa9;
    bottom10 = bottom9+weight10;
    weight11 = AMP*sqr(F6P)/(k1*k3*f13*1{micromolar});
    topa11 = topa10+weight11;
    bottom11 = bottom10+weight11;
    weight12 = AMP*sqr(F6P)*sqr(atp)/(k1*k3*k4*f13*f41*f43*sqr(1{micromolar}));
    topa12 = topa11+weight12;
    bottom12 = bottom11+weight12;
    weight13 = AMP*FBP/(k1*k2);
    topa13 = topa12;
    bottom13 = bottom12+weight13;
    weight14 = AMP*FBP*sqr(atp)/(k1*k2*k4*f42*f41*1{micromolar});
    topa14 = topa13;
    bottom14 = bottom13+weight14;
    weight15 = AMP*FBP*sqr(F6P)/(k1*k2*k3*f23*f13*1{micromolar});
    topa15 = topa14;
    bottom15 = bottom14+weight15;
    topb = weight15;
    weight16 = AMP*FBP*sqr(F6P)*sqr(atp)/(k1*k2*k3*k4*f23*f13*f42*f41*f43*sqr(1{micromolar}));
    topa16 = topa15+weight16;
    bottom16 = bottom15+weight16;
  enddef;

  // title: JPDH
  // alternative: rate of the pyruvate dehydrogenase reaction
  def comp JPDH as
    // isComputationalComponentFor: #property_32; physicalPropertyOf #process_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var JPDH: micromolar_millisecond {pub: out};
    var p1: dimensionless {init: 400.0};
    var p2: dimensionless {init: 1.0};
    var p3: micromolar {init: 0.01};
    var JGPDHbas: micromolar_millisecond {init: 0.0005};
    // isComputationalComponentFor: #property_33; physicalPropertyOf #entity_27; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var NADm: millimolar {pub: in};
    // isComputationalComponentFor: #property_34; physicalPropertyOf #entity_28; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Cam: micromolar {pub: in};
    // isComputationalComponentFor: #property_35; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var NADHm: millimolar {pub: in};
    // isComputationalComponentFor: #property_36; #process_4; #sink_4; hasMultiplier 1.0; #entity_20; part_of #entity_21; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:70817; #source_6; hasMultiplier 1.0; #entity_18; #entity_19; name Glycolytic compartment; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:70817; name Glyceraldehyde 3-P dehydrogenase flux out of glycolytic compartment; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var JGPDH: micromolar_millisecond {pub: in};
    JPDH = p1/(p2+NADHm/NADm)*(Cam/(p3+Cam))*(JGPDH+JGPDHbas);
  enddef;

  // title: NADHm
  // alternative: mitochondrial NADH
  def comp NADHm as
    // isComputationalComponentFor: #property_37; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var NADHm: millimolar {init: 0.4, pub: out};
    var gamma: dimensionless {pub: in};
    // isComputationalComponentFor: #property_38; #process_6; name Flux of pyruvate dehydrogenase in the mitochondria; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var JPDH: micromolar_millisecond {pub: in};
    // isComputationalComponentFor: #property_39; physicalPropertyOf #entity_31; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Consumption of Oxygen by the mitochondria
    var JO: micromolar_millisecond {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in};
    ode(NADHm, time) = gamma*(JPDH-JO);
  enddef;

  // title: JO
  // alternative: rate of oxygen consumption at the final stage of the electron transport chain
  def comp JO as
    // isComputationalComponentFor: #property_40; #entity_31; part_of #entity_21; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:15379; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Consumption of Oxygen by the mitochondria
    var JO: micromolar_millisecond {pub: out};
    var p4: micromolar_millisecond {init: 0.6};
    var p5: millimolar {init: 0.1};
    var p6: millivolt {init: 177.0};
    var p7: millivolt {init: 5.0};
    // isComputationalComponentFor: #property_41; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var NADHm: millimolar {pub: in};
    // isComputationalComponentFor: #property_42; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Mitochondrial inner membrane potential changes
    var delta_psi: millivolt {pub: in};
    JO = p4*(NADHm/(p5+NADHm))/(1.0{dimensionless}+exp((delta_psi-p6)/p7));
  enddef;

  // title: NADm
  // alternative: mitochondrial NAD
  def comp NADm as
    // isComputationalComponentFor: #property_43; #entity_27; part_of #entity_21; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:13389; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var NADm: millimolar {pub: out};
    var NADmtot: millimolar {init: 10.0};
    // isComputationalComponentFor: #property_44; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var NADHm: millimolar {pub: in};
    NADm = NADmtot-NADHm;
  enddef;

  // title: delta_psi
  // alternative: mitochondrial inner membrane potential
  def comp delta_psi as
    // isComputationalComponentFor: #property_45; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Mitochondrial inner membrane potential changes
    var delta_psi: millivolt {init: 164.0, pub: out};
    var Cmito: micromolar_millivolt {init: 1.8};
    // isComputationalComponentFor: #property_46; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Flux through respiration-driven proton pumps
    var JHres: micromolar_millisecond {pub: in};
    // isComputationalComponentFor: #property_47; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Phosphorylation protein flux
    var JHatp: micromolar_millisecond {pub: in};
    // isComputationalComponentFor: #property_48; physicalPropertyOf #process_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var JANT: micromolar_millisecond {pub: in};
    // isComputationalComponentFor: #property_49; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Proton leakage into mitochondria
    var JHleak: micromolar_millisecond {pub: in};
    // isComputationalComponentFor: #property_50; #process_8; #mediator_5; #entity_37; hasPhysicalDefinition http://identifiers.org/go/GO:0005432; #sink_6; hasMultiplier 1.0; #entity_36; part_of #entity_34; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; #source_9; hasMultiplier 1.0; #entity_28; part_of #entity_29; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; name Calcium flux from mitochondria to the cytosol; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Calcium flux from mitochondria to the cytosol
    var JNaCa: micromolar_millisecond {pub: in};
    // isComputationalComponentFor: #property_51; #process_9; #source_10; hasMultiplier 1.0; #entity_38; #entity_39; part_of #entity_21; hasPhysicalDefinition https://identifiers.org/uniprot/Q6P6Q9; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; name Flux through calcium uniporters; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Flux through calcium uniporters
    var Juni: micromolar_millisecond {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in};
    ode(delta_psi, time) = (JHres-(JHatp+JANT+JHleak+JNaCa+2.0{dimensionless}*Juni))/Cmito;
  enddef;

  // title: JHres
  // alternative: flux through respiration-driven proton pumps
  def comp JHres as
    // isComputationalComponentFor: #property_52; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Flux through respiration-driven proton pumps
    var JHres: micromolar_millisecond {pub: out};
    var p8: micromolar_millisecond {init: 7.0};
    var p9: millimolar {init: 0.1};
    var p10: millivolt {init: 177.0};
    var p11: millivolt {init: 5.0};
    // isComputationalComponentFor: #property_53; #entity_30; part_of #entity_21; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:16908; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var NADHm: millimolar {pub: in};
    // isComputationalComponentFor: #property_54; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Mitochondrial inner membrane potential changes
    var delta_psi: millivolt {pub: in};
    JHres = p8*(NADHm/(p9+NADHm))/(1.0{dimensionless}+exp((delta_psi-p10)/p11));
  enddef;

  // title: JF1F0
  // alternative: rate of the F1F0 ATP synthase catalysed reaction
  def comp JF1F0 as
    // isComputationalComponentFor: #property_55; physicalPropertyOf #process_10; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Flux of F1F0 ATP synthase
    var JF1F0: micromolar_millisecond {pub: out};
    var p13: millimolar {init: 10.0};
    var p14: millivolt {init: 190.0};
    var p15: millivolt {init: 8.5};
    var p16: micromolar_millisecond {init: 35.0};
    // isComputationalComponentFor: #property_56; physicalPropertyOf #entity_41; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var ATPm: millimolar {pub: in};
    // isComputationalComponentFor: #property_57; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Mitochondrial inner membrane potential changes
    var delta_psi: millivolt {pub: in};
    JF1F0 = p16*p13/(p13+ATPm)/(1.0{dimensionless}+exp((p14-delta_psi)/p15));
  enddef;

  // title: JHatp
  // title: JGK
  // alternative: rate of the glucokinase reaction
  // alternative: rate of ATP-driven proton flux
  def comp JHatp as
    // isComputationalComponentFor: #property_58; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Phosphorylation protein flux
    var JHatp: micromolar_millisecond {pub: out};
    // isComputationalComponentFor: #property_59; physicalPropertyOf #process_10; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Flux of F1F0 ATP synthase
    var JF1F0: micromolar_millisecond {pub: in};
    JHatp = 3.0{dimensionless}*JF1F0;
  enddef;

  def comp JGK as
    var JGK_ms: micromolar_millisecond {pub: out};
    var JGK: micromolar_second {init: 0.4};
    var kappa: dimensionless {pub: in};
    JGK_ms = kappa*JGK;
  enddef;

  // title: JHleak
  // alternative: proton leakage into the mitochodria down the proton gradient
  def comp JHleak as
    // isComputationalComponentFor: #property_60; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Proton leakage into mitochondria
    var JHleak: micromolar_millisecond {pub: out};
    var p17: micromolar_millisecond_millivolt {init: 0.002};
    var p18: micromolar_millisecond {init: -0.03};
    // isComputationalComponentFor: #property_61; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Mitochondrial inner membrane potential changes
    var delta_psi: millivolt {pub: in};
    JHleak = p17*delta_psi+p18;
  enddef;

  // title: JANT
  // alternative: rate of ADP and ATP flux through the adenine nucleotide translocator
  def comp JANT as
    // isComputationalComponentFor: #property_62; #process_7; #mediator_4; #entity_35; hasPhysicalDefinition http://identifiers.org/go/GO:0051503; #sink_5; hasMultiplier 1.0; #entity_33; #entity_34; hasPhysicalDefinition http://identifiers.org/fma/FMA:66836; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:15422; #source_8; hasMultiplier 1.0; #entity_32; #entity_21; hasPhysicalDefinition http://identifiers.org/go/GO:0005739; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:15422; name ATP flux through the adenine nucleotide translocator; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var JANT: micromolar_millisecond {pub: out};
    var p19: micromolar_millisecond {init: 0.35};
    var p20: dimensionless {init: 2.0};
    var FRT: per_millivolt {init: 0.037410133};
    var RATm: dimensionless {pub: in};
    // isComputationalComponentFor: #property_63; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Mitochondrial inner membrane potential changes
    var delta_psi: millivolt {pub: in};
    JANT = p19*(RATm/(RATm+p20)/exp(-0.5{dimensionless}*FRT*delta_psi));
  enddef;

  def comp RATm as
    var RATm: dimensionless {pub: out};
    // isComputationalComponentFor: #property_64; physicalPropertyOf #entity_41; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var ATPm: millimolar {pub: in};
    // isComputationalComponentFor: #property_65; #entity_42; part_of #entity_29; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:16761; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var ADPm: millimolar {pub: in};
    RATm = ATPm/ADPm;
  enddef;

  // title: Juni
  // alternative: calcium flux into the mitochondria through a calcium uniporter
  def comp Juni as
    // isComputationalComponentFor: #property_66; physicalPropertyOf #process_9; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Flux through calcium uniporters
    var Juni: micromolar_millisecond {pub: out};
    var p21: per_micromolar_millisecond_millivolt {init: 0.04};
    var p22: second_order_rate_constant {init: 1.1};
    // isComputationalComponentFor: #property_67; physicalPropertyOf #entity_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var c: micromolar {pub: in};
    // isComputationalComponentFor: #property_68; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Mitochondrial inner membrane potential changes
    var delta_psi: millivolt {pub: in};
    Juni = (p21*delta_psi-p22)*sqr(c);
  enddef;

  // title: JNaCa
  // alternative: calcium flux out of the mitochondria into the cytosol through the sodium-calcium ion exchanger
  def comp JNaCa as
    // isComputationalComponentFor: #property_69; physicalPropertyOf #process_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Calcium flux from mitochondria to the cytosol
    var JNaCa: micromolar_millisecond {pub: out};
    var p23: micromolar_millisecond {init: 0.01};
    var p24: per_millivolt {init: 0.016};
    // isComputationalComponentFor: #property_70; #entity_13; part_of #entity_14; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var c: micromolar {pub: in};
    // isComputationalComponentFor: #property_71; physicalPropertyOf #entity_28; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Cam: micromolar {pub: in};
    // isComputationalComponentFor: #property_72; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Mitochondrial inner membrane potential changes
    var delta_psi: millivolt {pub: in};
    JNaCa = p23/c*Cam*exp(p24*delta_psi);
  enddef;

  // title: Cam
  // alternative: mitochondrial calcium concentration
  def comp Cam as
    // isComputationalComponentFor: #property_73; physicalPropertyOf #entity_28; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Cam: micromolar {init: 0.2, pub: out};
    var fmito: dimensionless {init: 0.01};
    var Jmito: micromolar_millisecond {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in};
    ode(Cam, time) = -fmito*Jmito;
  enddef;

  def comp Jmito as
    var Jmito: micromolar_millisecond {pub: out};
    // isComputationalComponentFor: #property_74; physicalPropertyOf #process_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Calcium flux from mitochondria to the cytosol
    var JNaCa: micromolar_millisecond {pub: in};
    // isComputationalComponentFor: #property_75; physicalPropertyOf #process_9; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Flux through calcium uniporters
    var Juni: micromolar_millisecond {pub: in};
    Jmito = JNaCa-Juni;
  enddef;

  // title: ADPm
  // alternative: mitochondrial ADP
  def comp ADPm as
    // isComputationalComponentFor: #property_76; physicalPropertyOf #entity_42; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var ADPm: millimolar {init: 11.1, pub: out};
    var gamma: dimensionless {pub: in};
    // isComputationalComponentFor: #property_77; physicalPropertyOf #process_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var JANT: micromolar_millisecond {pub: in};
    // isComputationalComponentFor: #property_78; #process_10; #source_11; hasMultiplier 1.0; #entity_40; hasPhysicalDefinition http://identifiers.org/go/GO:0016887; name Flux of F1F0 ATP synthase; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Flux of F1F0 ATP synthase
    var JF1F0: micromolar_millisecond {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in};
    ode(ADPm, time) = gamma*(JANT-JF1F0);
  enddef;

  // title: ATPm
  // alternative: mitochondrial ATP
  def comp ATPm as
    // isComputationalComponentFor: #property_79; #entity_41; #entity_29; #entity_14; #entity_15; hasPhysicalDefinition http://identifiers.org/fma/FMA:16016; hasPhysicalDefinition http://identifiers.org/fma/FMA:85704; hasPhysicalDefinition http://identifiers.org/go/GO:0005739; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:15422; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var ATPm: millimolar {pub: out};
    var Amtot: millimolar {init: 15.0};
    // isComputationalComponentFor: #property_80; physicalPropertyOf #entity_42; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var ADPm: millimolar {pub: in};
    ATPm = Amtot-ADPm;
  enddef;

  // title: adp
  // alternative: cytosolic ADP concentration
  def comp adp as
    // isComputationalComponentFor: #property_81; physicalPropertyOf #entity_17; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var adp: micromolar {init: 1137.0, pub: out};
    var delta: dimensionless {pub: in};
    // isComputationalComponentFor: #property_82; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Cystolic hydrolysis of ATP in the electrical/calcium compartment
    var Jhyd: micromolar_millisecond {pub: in};
    // isComputationalComponentFor: #property_83; physicalPropertyOf #process_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var JANT: micromolar_millisecond {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in};
    ode(adp, time) = -delta*JANT+Jhyd;
  enddef;

  // title: Jhyd
  // alternative: cytosolic hydrolysis of ATP
  def comp Jhyd as
    // isComputationalComponentFor: #property_84; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Cystolic hydrolysis of ATP in the electrical/calcium compartment
    var Jhyd: micromolar_millisecond {pub: out};
    var khyd: second_order_rate_constant {init: 0.00005};
    var khydbas: first_order_rate_constant {init: 0.00005};
    // isComputationalComponentFor: #property_85; physicalPropertyOf #entity_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var c: micromolar {pub: in};
    // isComputationalComponentFor: #property_86; physicalPropertyOf #entity_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var atp: micromolar {pub: in};
    Jhyd = (khyd*c+khydbas)*atp;
  enddef;

  // title: atp
  // alternative: cytosolic ATP
  def comp atp as
    // isComputationalComponentFor: #property_87; #entity_16; part_of #entity_14; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:15422; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var atp: micromolar {pub: out};
    var atot: micromolar {init: 2500.0};
    // isComputationalComponentFor: #property_88; #entity_17; part_of #entity_14; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:16761; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var adp: micromolar {pub: in};
    atp = atot-adp;
  enddef;

  // title: c
  // alternative: cytosolic calcium
  def comp c as
    // isComputationalComponentFor: #property_89; physicalPropertyOf #entity_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var c: micromolar {init: 0.17, pub: out};
    var fcyt: dimensionless {init: 0.01};
    var delta: dimensionless {pub: in};
    // isComputationalComponentFor: #property_90; physicalPropertyOf #process_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Flux of calcium out of the endoplasmic reticulun
    var Jer: micromolar_millisecond {pub: in};
    // isComputationalComponentFor: #property_91; physicalPropertyOf #process_12; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Calcium flux across the plasma membrane.
    var Jmem: micromolar_millisecond {pub: in};
    var Jmito: micromolar_millisecond {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in};
    ode(c, time) = fcyt*(Jmem+Jer+delta*Jmito);
  enddef;

  // title: Jmem
  // alternative: rate of calcium flux across the plasma membrane
  def comp Jmem as
    // isComputationalComponentFor: #property_92; #process_12; #source_13; hasMultiplier 1.0; #entity_45; #entity_46; hasPhysicalDefinition http://identifiers.org/fma/FMA:85704; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; name Calcium flux across the plasma membrane.; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Calcium flux across the plasma membrane.
    var Jmem: micromolar_millisecond {pub: out};
    var kPMCA: first_order_rate_constant {init: 0.1};
    var alpha: micromolar_millisecond_femtoampere {init: 4.5E-6};
    var Cbas: micromolar {init: 0.05};
    // isComputationalComponentFor: #property_93; physicalPropertyOf #entity_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var c: micromolar {pub: in};
    // isComputationalComponentFor: #property_94; #process_0; #mediator_0; #entity_5; hasPhysicalDefinition http://identifiers.org/go/GO:0005891; #sink_1; hasMultiplier 1.0; #entity_3; part_of #entity_4; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; #sink_0; hasMultiplier 1.0; #entity_0; part_of #entity_1; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; #source_1; hasMultiplier 1.0; hasPhysicalEntityReference #entity_3; #source_0; hasMultiplier 1.0; hasPhysicalEntityReference #entity_0; name Voltage gated calcium rectifier current.; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    var Ica: femtoampere {pub: in};
    Jmem = -(alpha*Ica+kPMCA*(c-Cbas));
  enddef;

  // title: Jleak
  // alternative: rate of calcium leakage out of the endoplasmic reticulum
  def comp Jleak as
    // isComputationalComponentFor: #property_95; physicalPropertyOf #process_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Calcium leak flux out of ER
    var Jleak: micromolar_millisecond {pub: out};
    var pleak: first_order_rate_constant {init: 0.0002};
    // isComputationalComponentFor: #property_96; physicalPropertyOf #entity_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var c: micromolar {pub: in};
    // isComputationalComponentFor: #property_97; physicalPropertyOf #entity_43; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Caer: micromolar {pub: in};
    Jleak = pleak*(Caer-c);
  enddef;

  // title: JSERCA
  // alternative: rate of calcium flux into the endoplasmic reticulum through the SERCA pumps
  def comp JSERCA as
    // isComputationalComponentFor: #property_98; physicalPropertyOf #process_14; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Flux into the ER from the cytosol is through SERCA
    var JSERCA: micromolar_millisecond {pub: out};
    var kSERCA: first_order_rate_constant {init: 0.4};
    // isComputationalComponentFor: #property_99; physicalPropertyOf #entity_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var c: micromolar {pub: in};
    JSERCA = kSERCA*c;
  enddef;

  // title: Jer
  // alternative: rate of calcium flux out of the endoplasmic reticulum
  def comp Jer as
    // isComputationalComponentFor: #property_100; physicalPropertyOf #process_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Flux of calcium out of the endoplasmic reticulun
    var Jer: micromolar_millisecond {pub: out};
    // isComputationalComponentFor: #property_101; #process_13; #source_14; hasMultiplier 1.0; hasPhysicalEntityReference #entity_43; name Calcium leak out of ER; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Calcium leak flux out of ER
    var Jleak: micromolar_millisecond {pub: in};
    // isComputationalComponentFor: #property_102; #process_14; #sink_7; hasMultiplier 1.0; hasPhysicalEntityReference #entity_43; #source_15; hasMultiplier 1.0; hasPhysicalEntityReference #entity_36; name Flux of Ca2+ into the ER from the cytosol through SERCA; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Flux into the ER from the cytosol is through SERCA
    var JSERCA: micromolar_millisecond {pub: in};
    Jer = Jleak-JSERCA;
  enddef;

  // title: Caer
  // alternative: calcium
  def comp Caer as
    // isComputationalComponentFor: #property_103; #entity_43; #entity_44; part_of #entity_14; hasPhysicalDefinition http://identifiers.org/go/GO:0005783; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Caer: micromolar {init: 345.0, pub: out};
    var fer: dimensionless {init: 0.01};
    var Vc_Ver: dimensionless {init: 31.0};
    // isComputationalComponentFor: #property_104; #process_11; #source_12; hasMultiplier 1.0; hasPhysicalEntityReference #entity_43; name Flux of calcium out of the endoplasmic reticulum; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Flux of calcium out of the endoplasmic reticulun
    var Jer: micromolar_millisecond {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: millisecond {pub: in};
    ode(Caer, time) = -fer*Vc_Ver*Jer;
  enddef;

  def comp model_parameters as
    var gamma: dimensionless {init: 0.001, pub: out};
    var kappa: dimensionless {init: 0.001, pub: out};
    var delta: dimensionless {pub: out};
    var VK: millivolt {init: -75.0, pub: out};
    var VCa: millivolt {init: 25.0, pub: out};
    var AMP: micromolar {init: 500.0, pub: out};
    delta = 3.9{dimensionless}/53.2{dimensionless};
  enddef;

  def group as containment for
    comp membrane incl
      comp Ik incl
        comp n;
      endcomp;
      comp Ikatp;
      comp Ikca;
      comp Ica incl
        comp m;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp Ik incl
      comp n;
    endcomp;
    comp Ica incl
      comp m;
    endcomp;
  enddef;
  def map between environment and delta_psi for
    vars time and time;
  enddef;
  def map between RATm and JANT for
    vars RATm and RATm;
  enddef;
  def map between environment and adp for
    vars time and time;
  enddef;
  def map between environment and FBP for
    vars time and time;
  enddef;
  def map between Juni and Jmito for
    vars Juni and Juni;
  enddef;
  def map between JHatp and delta_psi for
    vars JHatp and JHatp;
  enddef;
  def map between Ica and Jmem for
    vars Ica and Ica;
  enddef;
  def map between JANT and adp for
    vars JANT and JANT;
  enddef;
  def map between JGK and G6P for
    vars JGK_ms and JGK_ms;
  enddef;
  def map between Ik and membrane for
    vars Ik and Ik;
  enddef;
  def map between membrane and Ikatp for
    vars Vm and Vm;
  enddef;
  def map between delta_psi and JF1F0 for
    vars delta_psi and delta_psi;
  enddef;
  def map between environment and Ik for
    vars time and time;
  enddef;
  def map between NADm and JPDH for
    vars NADm and NADm;
  enddef;
  def map between ADPm and ATPm for
    vars ADPm and ADPm;
  enddef;
  def map between model_parameters and Ik for
    vars VK and VK;
  enddef;
  def map between environment and Ikca for
    vars time and time;
  enddef;
  def map between membrane and Ikca for
    vars Vm and Vm;
  enddef;
  def map between Ik and n for
    vars Vm and Vm;
    vars time and time;
  enddef;
  def map between delta_psi and JO for
    vars delta_psi and delta_psi;
  enddef;
  def map between JGPDH and FBP for
    vars JGPDH and JGPDH;
  enddef;
  def map between c and Juni for
    vars c and c;
  enddef;
  def map between ATPm and RATm for
    vars ATPm and ATPm;
  enddef;
  def map between c and Jleak for
    vars c and c;
  enddef;
  def map between JO and NADHm for
    vars JO and JO;
  enddef;
  def map between model_parameters and NADHm for
    vars gamma and gamma;
  enddef;
  def map between environment and c for
    vars time and time;
  enddef;
  def map between JANT and ADPm for
    vars JANT and JANT;
  enddef;
  def map between JNaCa and Jmito for
    vars JNaCa and JNaCa;
  enddef;
  def map between Jmito and Cam for
    vars Jmito and Jmito;
  enddef;
  def map between Jer and Caer for
    vars Jer and Jer;
  enddef;
  def map between G6P and F6P for
    vars G6P and G6P;
  enddef;
  def map between delta_psi and JHleak for
    vars delta_psi and delta_psi;
  enddef;
  def map between m and Ica for
    vars m_infinity and m_infinity;
  enddef;
  def map between delta_psi and JHres for
    vars delta_psi and delta_psi;
  enddef;
  def map between JNaCa and delta_psi for
    vars JNaCa and JNaCa;
  enddef;
  def map between Cam and JNaCa for
    vars Cam and Cam;
  enddef;
  def map between JPFK and FBP for
    vars JPFK_ms and JPFK_ms;
  enddef;
  def map between NADHm and JPDH for
    vars NADHm and NADHm;
  enddef;
  def map between JANT and delta_psi for
    vars JANT and JANT;
  enddef;
  def map between Caer and Jleak for
    vars Caer and Caer;
  enddef;
  def map between environment and Caer for
    vars time and time;
  enddef;
  def map between atp and Jhyd for
    vars atp and atp;
  enddef;
  def map between JPFK and G6P for
    vars JPFK_ms and JPFK_ms;
  enddef;
  def map between c and JSERCA for
    vars c and c;
  enddef;
  def map between model_parameters and JGK for
    vars kappa and kappa;
  enddef;
  def map between Ikca and membrane for
    vars Ikca and Ikca;
  enddef;
  def map between model_parameters and JPFK for
    vars kappa and kappa;
    vars AMP and AMP;
  enddef;
  def map between membrane and Ica for
    vars Vm and Vm;
  enddef;
  def map between delta_psi and Juni for
    vars delta_psi and delta_psi;
  enddef;
  def map between Jmem and c for
    vars Jmem and Jmem;
  enddef;
  def map between environment and Ica for
    vars time and time;
  enddef;
  def map between NADHm and JO for
    vars NADHm and NADHm;
  enddef;
  def map between delta_psi and JANT for
    vars delta_psi and delta_psi;
  enddef;
  def map between ADPm and RATm for
    vars ADPm and ADPm;
  enddef;
  def map between Jleak and Jer for
    vars Jleak and Jleak;
  enddef;
  def map between JGPDH and JPDH for
    vars JGPDH and JGPDH;
  enddef;
  def map between ATPm and JF1F0 for
    vars ATPm and ATPm;
  enddef;
  def map between F6P and JPFK for
    vars F6P and F6P;
  enddef;
  def map between atp and Ikatp for
    vars atp and atp;
  enddef;
  def map between n and Ik for
    vars n and n;
  enddef;
  def map between membrane and Ik for
    vars Vm and Vm;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between FBP and JGPDH for
    vars FBP and FBP;
  enddef;
  def map between Jmito and c for
    vars Jmito and Jmito;
  enddef;
  def map between delta_psi and JNaCa for
    vars delta_psi and delta_psi;
  enddef;
  def map between JF1F0 and ADPm for
    vars JF1F0 and JF1F0;
  enddef;
  def map between JF1F0 and JHatp for
    vars JF1F0 and JF1F0;
  enddef;
  def map between JSERCA and Jer for
    vars JSERCA and JSERCA;
  enddef;
  def map between model_parameters and Ica for
    vars VCa and VCa;
  enddef;
  def map between model_parameters and Ikca for
    vars VK and VK;
  enddef;
  def map between atp and JPFK for
    vars atp and atp;
  enddef;
  def map between c and Jhyd for
    vars c and c;
  enddef;
  def map between c and Ikca for
    vars c and c;
  enddef;
  def map between c and Jmem for
    vars c and c;
  enddef;
  def map between c and JNaCa for
    vars c and c;
  enddef;
  def map between FBP and JPFK for
    vars FBP and FBP;
  enddef;
  def map between model_parameters and ADPm for
    vars gamma and gamma;
  enddef;
  def map between Ikatp and membrane for
    vars Ikatp and Ikatp;
  enddef;
  def map between adp and atp for
    vars adp and adp;
  enddef;
  def map between Ica and membrane for
    vars Ica and Ica;
  enddef;
  def map between JPDH and NADHm for
    vars JPDH and JPDH;
  enddef;
  def map between NADHm and NADm for
    vars NADHm and NADHm;
  enddef;
  def map between environment and Ikatp for
    vars time and time;
  enddef;
  def map between environment and ADPm for
    vars time and time;
  enddef;
  def map between Cam and JPDH for
    vars Cam and Cam;
  enddef;
  def map between environment and Cam for
    vars time and time;
  enddef;
  def map between adp and Ikatp for
    vars adp and adp;
  enddef;
  def map between JHres and delta_psi for
    vars JHres and JHres;
  enddef;
  def map between environment and G6P for
    vars time and time;
  enddef;
  def map between model_parameters and adp for
    vars delta and delta;
  enddef;
  def map between Ica and m for
    vars Vm and Vm;
  enddef;
  def map between Jhyd and adp for
    vars Jhyd and Jhyd;
  enddef;
  def map between Jer and c for
    vars Jer and Jer;
  enddef;
  def map between Juni and delta_psi for
    vars Juni and Juni;
  enddef;
  def map between model_parameters and Ikatp for
    vars VK and VK;
  enddef;
  def map between model_parameters and c for
    vars delta and delta;
  enddef;
  def map between environment and NADHm for
    vars time and time;
  enddef;
  def map between NADHm and JHres for
    vars NADHm and NADHm;
  enddef;
  def map between JHleak and delta_psi for
    vars JHleak and JHleak;
  enddef;
enddef;
