def model cardiac_AP_Na_only as
  def unit J_per_K_per_mol as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit fmol_per_sec as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fA as
    unit ampere {pref: femto};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var t: second {init: 0, pub: out};
    var R: J_per_K_per_mol {init: 8.314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: C_per_mol {init: 96485, pub: out};
    var C_m: fF {init: 153400, pub: out};
    var q_Na_o: fmol {init: 725.48, pub: out};
    var q_Na_i: fmol {init: 380, pub: out};
    var q_S000_Na: fmol {init: 0.00001273687, pub: out};
    var q_S010_Na: fmol {init: 0.00001273687, pub: out};
    var q_S100_Na: fmol {init: 0.00001273687, pub: out};
    var q_S110_Na: fmol {init: 0.00001273687, pub: out};
    var q_S200_Na: fmol {init: 0.00001273687, pub: out};
    var q_S210_Na: fmol {init: 0.00001273687, pub: out};
    var q_S300_Na: fmol {init: 0.00001273687, pub: out};
    var q_S310_Na: fmol {init: 0.00001273687, pub: out};
    var q_S001_Na: fmol {init: 0.00001273687, pub: out};
    var q_S011_Na: fmol {init: 0.00001273687, pub: out};
    var q_S101_Na: fmol {init: 0.00001273687, pub: out};
    var q_S111_Na: fmol {init: 0.00001273687, pub: out};
    var q_S201_Na: fmol {init: 0.00001273687, pub: out};
    var q_S211_Na: fmol {init: 0.00001273687, pub: out};
    var q_S301_Na: fmol {init: 0.00001273687, pub: out};
    var q_S311_Na: fmol {init: 0.00001273687, pub: out};
    var v_Na: fmol_per_sec {pub: in};
    ode(q_Na_o, t) = 0{dimensionless}*v_Na;
    ode(q_Na_i, t) = 0{dimensionless}*(-v_Na);
    var q_mem: fC {init: -13806, pub: out};
    var I_mem_Na: fA {pub: in};
    ode(q_mem, t) = 0{dimensionless}*I_mem_Na;
  enddef;

  def comp Na_parameters as
    var K_000_Na: per_fmol {init: 0.0073376, pub: out};
    var K_001_Na: per_fmol {init: 23718.0222, pub: out};
    var K_010_Na: per_fmol {init: 17499.8767, pub: out};
    var K_011_Na: per_fmol {init: 56566767727.4036, pub: out};
    var K_100_Na: per_fmol {init: 1.5633e-05, pub: out};
    var K_101_Na: per_fmol {init: 50.5317, pub: out};
    var K_110_Na: per_fmol {init: 37.2839, pub: out};
    var K_111_Na: per_fmol {init: 120516694.0958, pub: out};
    var K_200_Na: per_fmol {init: 9.9918e-08, pub: out};
    var K_201_Na: per_fmol {init: 0.32298, pub: out};
    var K_210_Na: per_fmol {init: 0.2383, pub: out};
    var K_211_Na: per_fmol {init: 770290.0911, pub: out};
    var K_300_Na: per_fmol {init: 1.9159e-09, pub: out};
    var K_301_Na: per_fmol {init: 0.006193, pub: out};
    var K_310_Na: per_fmol {init: 0.0045694, pub: out};
    var K_311_Na: per_fmol {init: 14770.0739, pub: out};
    var K_Na_o: per_fmol {init: 0.017678, pub: out};
    var K_Na_i: per_fmol {init: 0.0024108, pub: out};
    var kappa_Na: fmol_per_sec {init: 32.858, pub: out};
    var kappa_h000: fmol_per_sec {init: 0.045709, pub: out};
    var kappa_h001: fmol_per_sec {init: 1.4141e-08, pub: out};
    var kappa_h100: fmol_per_sec {init: 21.4544, pub: out};
    var kappa_h101: fmol_per_sec {init: 6.6373e-06, pub: out};
    var kappa_h200: fmol_per_sec {init: 3356.675, pub: out};
    var kappa_h201: fmol_per_sec {init: 0.0010384, pub: out};
    var kappa_h300: fmol_per_sec {init: 175057.5863, pub: out};
    var kappa_h301: fmol_per_sec {init: 0.054157, pub: out};
    var kappa_j000: fmol_per_sec {init: 0.017824, pub: out};
    var kappa_j010: fmol_per_sec {init: 7.4736e-09, pub: out};
    var kappa_j100: fmol_per_sec {init: 8.3662, pub: out};
    var kappa_j110: fmol_per_sec {init: 3.5079e-06, pub: out};
    var kappa_j200: fmol_per_sec {init: 1308.9427, pub: out};
    var kappa_j210: fmol_per_sec {init: 0.00054883, pub: out};
    var kappa_j300: fmol_per_sec {init: 68264.0876, pub: out};
    var kappa_j310: fmol_per_sec {init: 0.028623, pub: out};
    var kappa_m000: fmol_per_sec {init: 5117405.6443, pub: out};
    var kappa_m001: fmol_per_sec {init: 1.5832, pub: out};
    var kappa_m010: fmol_per_sec {init: 2.1457, pub: out};
    var kappa_m011: fmol_per_sec {init: 6.6381e-07, pub: out};
    var kappa_m100: fmol_per_sec {init: 1601300127.6001, pub: out};
    var kappa_m101: fmol_per_sec {init: 495.389, pub: out};
    var kappa_m110: fmol_per_sec {init: 671.4132, pub: out};
    var kappa_m111: fmol_per_sec {init: 0.00020771, pub: out};
    var kappa_m200: fmol_per_sec {init: 125266701374.7363, pub: out};
    var kappa_m201: fmol_per_sec {init: 38753.3515, pub: out};
    var kappa_m210: fmol_per_sec {init: 52523.3901, pub: out};
    var kappa_m211: fmol_per_sec {init: 0.016249, pub: out};
    var zNa: dimensionless {init: 1, pub: out};
    var z_fh: dimensionless {init: -4.1892, pub: out};
    var z_fj: dimensionless {init: -4.0381, pub: out};
    var z_fm: dimensionless {init: 0.49541, pub: out};
    var z_rh: dimensionless {init: 1.2995, pub: out};
    var z_rj: dimensionless {init: 1.4281, pub: out};
    var z_rm: dimensionless {init: -2.4284, pub: out};
  enddef;

  def comp fast_Na as
    var t: second {pub: in};
    var R: J_per_K_per_mol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mol {pub: in};
    var C_m: fF {pub: in};
    var K_000_Na: per_fmol {pub: in};
    var K_001_Na: per_fmol {pub: in};
    var K_010_Na: per_fmol {pub: in};
    var K_011_Na: per_fmol {pub: in};
    var K_100_Na: per_fmol {pub: in};
    var K_101_Na: per_fmol {pub: in};
    var K_110_Na: per_fmol {pub: in};
    var K_111_Na: per_fmol {pub: in};
    var K_200_Na: per_fmol {pub: in};
    var K_201_Na: per_fmol {pub: in};
    var K_210_Na: per_fmol {pub: in};
    var K_211_Na: per_fmol {pub: in};
    var K_300_Na: per_fmol {pub: in};
    var K_301_Na: per_fmol {pub: in};
    var K_310_Na: per_fmol {pub: in};
    var K_311_Na: per_fmol {pub: in};
    var K_Na_o: per_fmol {pub: in};
    var K_Na_i: per_fmol {pub: in};
    var kappa_Na: fmol_per_sec {pub: in};
    var kappa_h000: fmol_per_sec {pub: in};
    var kappa_h001: fmol_per_sec {pub: in};
    var kappa_h100: fmol_per_sec {pub: in};
    var kappa_h101: fmol_per_sec {pub: in};
    var kappa_h200: fmol_per_sec {pub: in};
    var kappa_h201: fmol_per_sec {pub: in};
    var kappa_h300: fmol_per_sec {pub: in};
    var kappa_h301: fmol_per_sec {pub: in};
    var kappa_j000: fmol_per_sec {pub: in};
    var kappa_j010: fmol_per_sec {pub: in};
    var kappa_j100: fmol_per_sec {pub: in};
    var kappa_j110: fmol_per_sec {pub: in};
    var kappa_j200: fmol_per_sec {pub: in};
    var kappa_j210: fmol_per_sec {pub: in};
    var kappa_j300: fmol_per_sec {pub: in};
    var kappa_j310: fmol_per_sec {pub: in};
    var kappa_m000: fmol_per_sec {pub: in};
    var kappa_m001: fmol_per_sec {pub: in};
    var kappa_m010: fmol_per_sec {pub: in};
    var kappa_m011: fmol_per_sec {pub: in};
    var kappa_m100: fmol_per_sec {pub: in};
    var kappa_m101: fmol_per_sec {pub: in};
    var kappa_m110: fmol_per_sec {pub: in};
    var kappa_m111: fmol_per_sec {pub: in};
    var kappa_m200: fmol_per_sec {pub: in};
    var kappa_m201: fmol_per_sec {pub: in};
    var kappa_m210: fmol_per_sec {pub: in};
    var kappa_m211: fmol_per_sec {pub: in};
    var zNa: dimensionless {pub: in};
    var z_fh: dimensionless {pub: in};
    var z_fj: dimensionless {pub: in};
    var z_fm: dimensionless {pub: in};
    var z_rh: dimensionless {pub: in};
    var z_rj: dimensionless {pub: in};
    var z_rm: dimensionless {pub: in};
    var q_Na_o: fmol {pub: in};
    var q_Na_i: fmol {pub: in};
    var q_S000_Na: fmol {pub: in};
    var q_S010_Na: fmol {pub: in};
    var q_S100_Na: fmol {pub: in};
    var q_S110_Na: fmol {pub: in};
    var q_S200_Na: fmol {pub: in};
    var q_S210_Na: fmol {pub: in};
    var q_S300_Na: fmol {pub: in};
    var q_S310_Na: fmol {pub: in};
    var q_S001_Na: fmol {pub: in};
    var q_S011_Na: fmol {pub: in};
    var q_S101_Na: fmol {pub: in};
    var q_S111_Na: fmol {pub: in};
    var q_S201_Na: fmol {pub: in};
    var q_S211_Na: fmol {pub: in};
    var q_S301_Na: fmol {pub: in};
    var q_S311_Na: fmol {pub: in};
    var q_mem: fC {pub: in};
    var mu_Na_o: J_per_mol;
    var mu_Na_i: J_per_mol;
    var mu_S000_Na: J_per_mol;
    var mu_S010_Na: J_per_mol;
    var mu_S100_Na: J_per_mol;
    var mu_S110_Na: J_per_mol;
    var mu_S200_Na: J_per_mol;
    var mu_S210_Na: J_per_mol;
    var mu_S300_Na: J_per_mol;
    var mu_S310_Na: J_per_mol;
    var mu_S001_Na: J_per_mol;
    var mu_S011_Na: J_per_mol;
    var mu_S101_Na: J_per_mol;
    var mu_S111_Na: J_per_mol;
    var mu_S201_Na: J_per_mol;
    var mu_S211_Na: J_per_mol;
    var mu_S301_Na: J_per_mol;
    var mu_S311_Na: J_per_mol;
    var Am_Na: J_per_mol;
    var Af_Na: J_per_mol;
    var Ar_Na: J_per_mol;
    var v_Na: fmol_per_sec {pub: out};
    var Af_h000: J_per_mol;
    var Ar_h000: J_per_mol;
    var v_h000: fmol_per_sec {pub: out};
    var Af_h001: J_per_mol;
    var Ar_h001: J_per_mol;
    var v_h001: fmol_per_sec {pub: out};
    var Af_h100: J_per_mol;
    var Ar_h100: J_per_mol;
    var v_h100: fmol_per_sec {pub: out};
    var Af_h101: J_per_mol;
    var Ar_h101: J_per_mol;
    var v_h101: fmol_per_sec {pub: out};
    var Af_h200: J_per_mol;
    var Ar_h200: J_per_mol;
    var v_h200: fmol_per_sec {pub: out};
    var Af_h201: J_per_mol;
    var Ar_h201: J_per_mol;
    var v_h201: fmol_per_sec {pub: out};
    var Af_h300: J_per_mol;
    var Ar_h300: J_per_mol;
    var v_h300: fmol_per_sec {pub: out};
    var Af_h301: J_per_mol;
    var Ar_h301: J_per_mol;
    var v_h301: fmol_per_sec {pub: out};
    var Af_j000: J_per_mol;
    var Ar_j000: J_per_mol;
    var v_j000: fmol_per_sec {pub: out};
    var Af_j010: J_per_mol;
    var Ar_j010: J_per_mol;
    var v_j010: fmol_per_sec {pub: out};
    var Af_j100: J_per_mol;
    var Ar_j100: J_per_mol;
    var v_j100: fmol_per_sec {pub: out};
    var Af_j110: J_per_mol;
    var Ar_j110: J_per_mol;
    var v_j110: fmol_per_sec {pub: out};
    var Af_j200: J_per_mol;
    var Ar_j200: J_per_mol;
    var v_j200: fmol_per_sec {pub: out};
    var Af_j210: J_per_mol;
    var Ar_j210: J_per_mol;
    var v_j210: fmol_per_sec {pub: out};
    var Af_j300: J_per_mol;
    var Ar_j300: J_per_mol;
    var v_j300: fmol_per_sec {pub: out};
    var Af_j310: J_per_mol;
    var Ar_j310: J_per_mol;
    var v_j310: fmol_per_sec {pub: out};
    var Af_m000: J_per_mol;
    var Ar_m000: J_per_mol;
    var v_m000: fmol_per_sec {pub: out};
    var Af_m001: J_per_mol;
    var Ar_m001: J_per_mol;
    var v_m001: fmol_per_sec {pub: out};
    var Af_m010: J_per_mol;
    var Ar_m010: J_per_mol;
    var v_m010: fmol_per_sec {pub: out};
    var Af_m011: J_per_mol;
    var Ar_m011: J_per_mol;
    var v_m011: fmol_per_sec {pub: out};
    var Af_m100: J_per_mol;
    var Ar_m100: J_per_mol;
    var v_m100: fmol_per_sec {pub: out};
    var Af_m101: J_per_mol;
    var Ar_m101: J_per_mol;
    var v_m101: fmol_per_sec {pub: out};
    var Af_m110: J_per_mol;
    var Ar_m110: J_per_mol;
    var v_m110: fmol_per_sec {pub: out};
    var Af_m111: J_per_mol;
    var Ar_m111: J_per_mol;
    var v_m111: fmol_per_sec {pub: out};
    var Af_m200: J_per_mol;
    var Ar_m200: J_per_mol;
    var v_m200: fmol_per_sec {pub: out};
    var Af_m201: J_per_mol;
    var Ar_m201: J_per_mol;
    var v_m201: fmol_per_sec {pub: out};
    var Af_m210: J_per_mol;
    var Ar_m210: J_per_mol;
    var v_m210: fmol_per_sec {pub: out};
    var Af_m211: J_per_mol;
    var Ar_m211: J_per_mol;
    var v_m211: fmol_per_sec {pub: out};
    var v_S000_Na: fmol_per_sec;
    var v_S010_Na: fmol_per_sec;
    var v_S100_Na: fmol_per_sec;
    var v_S110_Na: fmol_per_sec;
    var v_S200_Na: fmol_per_sec;
    var v_S210_Na: fmol_per_sec;
    var v_S300_Na: fmol_per_sec;
    var v_S310_Na: fmol_per_sec;
    var v_S001_Na: fmol_per_sec;
    var v_S011_Na: fmol_per_sec;
    var v_S101_Na: fmol_per_sec;
    var v_S111_Na: fmol_per_sec;
    var v_S201_Na: fmol_per_sec;
    var v_S211_Na: fmol_per_sec;
    var v_S301_Na: fmol_per_sec;
    var v_S311_Na: fmol_per_sec;
    var V_mem: volt;
    var I_mem_Na: fA {pub: out};
    var V_mem_clamp: volt;
    var V_hold: volt {init: -0.08};
    var V_test: volt {init: -0.03};
    var V_return: volt {init: -0.08};
    var time_hold: second {init: 0.5};
    var time_testend: second {init: 1.0};
    V_mem_clamp = sel
      case t < time_hold:
        V_hold;
      case t < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    V_mem = q_mem/C_m;
    I_mem_Na = F*(-zNa*v_Na+z_rm*v_m000-z_fm*v_m000+z_rm*v_m100-z_fm*v_m100+z_rm*v_m010-z_fm*v_m010+z_rm*v_m110-z_fm*v_m110+z_rm*v_m210-z_fm*v_m210+z_rh*v_h000-z_fh*v_h000+z_rh*v_h200-z_fh*v_h200+z_rj*v_j100-z_fj*v_j100+z_rj*v_j200-z_fj*v_j200+z_rj*v_j300-z_fj*v_j300+z_rm*v_m200-z_fm*v_m200+z_rh*v_h100-z_fh*v_h100+z_rh*v_h300-z_fh*v_h300+z_rj*v_j000-z_fj*v_j000+z_rm*v_m001-z_fm*v_m001+z_rm*v_m101-z_fm*v_m101+z_rm*v_m011-z_fm*v_m011+z_rm*v_m111-z_fm*v_m111+z_rm*v_m211-z_fm*v_m211+z_rh*v_h001-z_fh*v_h001+z_rh*v_h201-z_fh*v_h201+z_rj*v_j010-z_fj*v_j010+z_rj*v_j110-z_fj*v_j110+z_rj*v_j210-z_fj*v_j210+z_rj*v_j310-z_fj*v_j310+z_rm*v_m201-z_fm*v_m201+z_rh*v_h101-z_fh*v_h101+z_rh*v_h301-z_fh*v_h301);
    mu_Na_o = R*T*ln(K_Na_o*q_Na_o);
    mu_Na_i = R*T*ln(K_Na_i*q_Na_i);
    mu_S000_Na = R*T*ln(K_000_Na*q_S000_Na);
    mu_S001_Na = R*T*ln(K_001_Na*q_S001_Na);
    mu_S010_Na = R*T*ln(K_010_Na*q_S010_Na);
    mu_S011_Na = R*T*ln(K_011_Na*q_S011_Na);
    mu_S100_Na = R*T*ln(K_100_Na*q_S100_Na);
    mu_S101_Na = R*T*ln(K_101_Na*q_S101_Na);
    mu_S110_Na = R*T*ln(K_110_Na*q_S110_Na);
    mu_S111_Na = R*T*ln(K_111_Na*q_S111_Na);
    mu_S200_Na = R*T*ln(K_200_Na*q_S200_Na);
    mu_S201_Na = R*T*ln(K_201_Na*q_S201_Na);
    mu_S210_Na = R*T*ln(K_210_Na*q_S210_Na);
    mu_S211_Na = R*T*ln(K_211_Na*q_S211_Na);
    mu_S300_Na = R*T*ln(K_300_Na*q_S300_Na);
    mu_S301_Na = R*T*ln(K_301_Na*q_S301_Na);
    mu_S310_Na = R*T*ln(K_310_Na*q_S310_Na);
    mu_S311_Na = R*T*ln(K_311_Na*q_S311_Na);
    v_h000 = kappa_h000*(exp(Af_h000/(R*T))-exp(Ar_h000/(R*T)));
    v_h001 = kappa_h001*(exp(Af_h001/(R*T))-exp(Ar_h001/(R*T)));
    v_h100 = kappa_h100*(exp(Af_h100/(R*T))-exp(Ar_h100/(R*T)));
    v_h101 = kappa_h101*(exp(Af_h101/(R*T))-exp(Ar_h101/(R*T)));
    v_h200 = kappa_h200*(exp(Af_h200/(R*T))-exp(Ar_h200/(R*T)));
    v_h201 = kappa_h201*(exp(Af_h201/(R*T))-exp(Ar_h201/(R*T)));
    v_h300 = kappa_h300*(exp(Af_h300/(R*T))-exp(Ar_h300/(R*T)));
    v_h301 = kappa_h301*(exp(Af_h301/(R*T))-exp(Ar_h301/(R*T)));
    v_j000 = kappa_j000*(exp(Af_j000/(R*T))-exp(Ar_j000/(R*T)));
    v_j010 = kappa_j010*(exp(Af_j010/(R*T))-exp(Ar_j010/(R*T)));
    v_j100 = kappa_j100*(exp(Af_j100/(R*T))-exp(Ar_j100/(R*T)));
    v_j110 = kappa_j110*(exp(Af_j110/(R*T))-exp(Ar_j110/(R*T)));
    v_j200 = kappa_j200*(exp(Af_j200/(R*T))-exp(Ar_j200/(R*T)));
    v_j210 = kappa_j210*(exp(Af_j210/(R*T))-exp(Ar_j210/(R*T)));
    v_j300 = kappa_j300*(exp(Af_j300/(R*T))-exp(Ar_j300/(R*T)));
    v_j310 = kappa_j310*(exp(Af_j310/(R*T))-exp(Ar_j310/(R*T)));
    v_m000 = kappa_m000*(exp(Af_m000/(R*T))-exp(Ar_m000/(R*T)));
    v_m001 = kappa_m001*(exp(Af_m001/(R*T))-exp(Ar_m001/(R*T)));
    v_m010 = kappa_m010*(exp(Af_m010/(R*T))-exp(Ar_m010/(R*T)));
    v_m011 = kappa_m011*(exp(Af_m011/(R*T))-exp(Ar_m011/(R*T)));
    v_m100 = kappa_m100*(exp(Af_m100/(R*T))-exp(Ar_m100/(R*T)));
    v_m101 = kappa_m101*(exp(Af_m101/(R*T))-exp(Ar_m101/(R*T)));
    v_m110 = kappa_m110*(exp(Af_m110/(R*T))-exp(Ar_m110/(R*T)));
    v_m111 = kappa_m111*(exp(Af_m111/(R*T))-exp(Ar_m111/(R*T)));
    v_m200 = kappa_m200*(exp(Af_m200/(R*T))-exp(Ar_m200/(R*T)));
    v_m201 = kappa_m201*(exp(Af_m201/(R*T))-exp(Ar_m201/(R*T)));
    v_m210 = kappa_m210*(exp(Af_m210/(R*T))-exp(Ar_m210/(R*T)));
    v_m211 = kappa_m211*(exp(Af_m211/(R*T))-exp(Ar_m211/(R*T)));
    Af_Na = mu_Na_i+zNa*F*V_mem_clamp+mu_S311_Na;
    Af_h000 = R*T*ln(K_000_Na*q_S000_Na)+z_fh*F*V_mem_clamp;
    Af_h001 = R*T*ln(K_001_Na*q_S001_Na)+z_fh*F*V_mem_clamp;
    Af_h100 = R*T*ln(K_100_Na*q_S100_Na)+z_fh*F*V_mem_clamp;
    Af_h101 = R*T*ln(K_101_Na*q_S101_Na)+z_fh*F*V_mem_clamp;
    Af_h200 = R*T*ln(K_200_Na*q_S200_Na)+z_fh*F*V_mem_clamp;
    Af_h201 = R*T*ln(K_201_Na*q_S201_Na)+z_fh*F*V_mem_clamp;
    Af_h300 = R*T*ln(K_300_Na*q_S300_Na)+z_fh*F*V_mem_clamp;
    Af_h301 = R*T*ln(K_301_Na*q_S301_Na)+z_fh*F*V_mem_clamp;
    Af_j000 = R*T*ln(K_000_Na*q_S000_Na)+z_fj*F*V_mem_clamp;
    Af_j010 = R*T*ln(K_010_Na*q_S010_Na)+z_fj*F*V_mem_clamp;
    Af_j100 = R*T*ln(K_100_Na*q_S100_Na)+z_fj*F*V_mem_clamp;
    Af_j110 = R*T*ln(K_110_Na*q_S110_Na)+z_fj*F*V_mem_clamp;
    Af_j200 = R*T*ln(K_200_Na*q_S200_Na)+z_fj*F*V_mem_clamp;
    Af_j210 = R*T*ln(K_210_Na*q_S210_Na)+z_fj*F*V_mem_clamp;
    Af_j300 = R*T*ln(K_300_Na*q_S300_Na)+z_fj*F*V_mem_clamp;
    Af_j310 = R*T*ln(K_310_Na*q_S310_Na)+z_fj*F*V_mem_clamp;
    Af_m000 = R*T*ln(K_000_Na*q_S000_Na)+z_fm*F*V_mem_clamp;
    Af_m001 = R*T*ln(K_001_Na*q_S001_Na)+z_fm*F*V_mem_clamp;
    Af_m010 = R*T*ln(K_010_Na*q_S010_Na)+z_fm*F*V_mem_clamp;
    Af_m011 = R*T*ln(K_011_Na*q_S011_Na)+z_fm*F*V_mem_clamp;
    Af_m100 = R*T*ln(K_100_Na*q_S100_Na)+z_fm*F*V_mem_clamp;
    Af_m101 = R*T*ln(K_101_Na*q_S101_Na)+z_fm*F*V_mem_clamp;
    Af_m110 = R*T*ln(K_110_Na*q_S110_Na)+z_fm*F*V_mem_clamp;
    Af_m111 = R*T*ln(K_111_Na*q_S111_Na)+z_fm*F*V_mem_clamp;
    Af_m200 = R*T*ln(K_200_Na*q_S200_Na)+z_fm*F*V_mem_clamp;
    Af_m201 = R*T*ln(K_201_Na*q_S201_Na)+z_fm*F*V_mem_clamp;
    Af_m210 = R*T*ln(K_210_Na*q_S210_Na)+z_fm*F*V_mem_clamp;
    Af_m211 = R*T*ln(K_211_Na*q_S211_Na)+z_fm*F*V_mem_clamp;
    Am_Na = zNa*F*V_mem_clamp;
    Ar_Na = mu_Na_o+mu_S311_Na;
    Ar_h000 = R*T*ln(K_010_Na*q_S010_Na)+z_rh*F*V_mem_clamp;
    Ar_h001 = R*T*ln(K_011_Na*q_S011_Na)+z_rh*F*V_mem_clamp;
    Ar_h100 = R*T*ln(K_110_Na*q_S110_Na)+z_rh*F*V_mem_clamp;
    Ar_h101 = R*T*ln(K_111_Na*q_S111_Na)+z_rh*F*V_mem_clamp;
    Ar_h200 = R*T*ln(K_210_Na*q_S210_Na)+z_rh*F*V_mem_clamp;
    Ar_h201 = R*T*ln(K_211_Na*q_S211_Na)+z_rh*F*V_mem_clamp;
    Ar_h300 = R*T*ln(K_310_Na*q_S310_Na)+z_rh*F*V_mem_clamp;
    Ar_h301 = R*T*ln(K_311_Na*q_S311_Na)+z_rh*F*V_mem_clamp;
    Ar_j000 = R*T*ln(K_001_Na*q_S001_Na)+z_rj*F*V_mem_clamp;
    Ar_j010 = R*T*ln(K_011_Na*q_S011_Na)+z_rj*F*V_mem_clamp;
    Ar_j100 = R*T*ln(K_101_Na*q_S101_Na)+z_rj*F*V_mem_clamp;
    Ar_j110 = R*T*ln(K_111_Na*q_S111_Na)+z_rj*F*V_mem_clamp;
    Ar_j200 = R*T*ln(K_201_Na*q_S201_Na)+z_rj*F*V_mem_clamp;
    Ar_j210 = R*T*ln(K_211_Na*q_S211_Na)+z_rj*F*V_mem_clamp;
    Ar_j300 = R*T*ln(K_301_Na*q_S301_Na)+z_rj*F*V_mem_clamp;
    Ar_j310 = R*T*ln(K_311_Na*q_S311_Na)+z_rj*F*V_mem_clamp;
    Ar_m000 = R*T*ln(K_100_Na*q_S100_Na)+z_rm*F*V_mem_clamp;
    Ar_m001 = R*T*ln(K_101_Na*q_S101_Na)+z_rm*F*V_mem_clamp;
    Ar_m010 = R*T*ln(K_110_Na*q_S110_Na)+z_rm*F*V_mem_clamp;
    Ar_m011 = R*T*ln(K_111_Na*q_S111_Na)+z_rm*F*V_mem_clamp;
    Ar_m100 = R*T*ln(K_200_Na*q_S200_Na)+z_rm*F*V_mem_clamp;
    Ar_m101 = R*T*ln(K_201_Na*q_S201_Na)+z_rm*F*V_mem_clamp;
    Ar_m110 = R*T*ln(K_210_Na*q_S210_Na)+z_rm*F*V_mem_clamp;
    Ar_m111 = R*T*ln(K_211_Na*q_S211_Na)+z_rm*F*V_mem_clamp;
    Ar_m200 = R*T*ln(K_300_Na*q_S300_Na)+z_rm*F*V_mem_clamp;
    Ar_m201 = R*T*ln(K_301_Na*q_S301_Na)+z_rm*F*V_mem_clamp;
    Ar_m210 = R*T*ln(K_310_Na*q_S310_Na)+z_rm*F*V_mem_clamp;
    Ar_m211 = R*T*ln(K_311_Na*q_S311_Na)+z_rm*F*V_mem_clamp;
    v_S000_Na = -v_m000-v_h000-v_j000;
    v_S001_Na = -v_m001-v_h001-(-v_j000);
    v_S010_Na = -v_m010+v_h000-v_j010;
    v_S011_Na = -v_m011+v_h001-(-v_j010);
    v_S100_Na = v_m000-v_m100-v_h100-v_j100;
    v_S101_Na = v_m001-v_m101-v_h101-(-v_j100);
    v_S110_Na = v_m010-v_m110+v_h100-v_j110;
    v_S111_Na = v_m011-v_m111+v_h101-(-v_j110);
    v_S200_Na = v_m100-v_m200-v_h200-v_j200;
    v_S201_Na = v_m101-v_m201-v_h201-(-v_j200);
    v_S210_Na = v_m110-v_m210+v_h200-v_j210;
    v_S211_Na = v_m111-v_m211+v_h201-(-v_j210);
    v_S300_Na = v_m200-v_h300-v_j300;
    v_S301_Na = v_m201-v_h301-(-v_j300);
    v_S310_Na = v_m210+v_h300-v_j310;
    v_S311_Na = v_m211+v_h301-(-v_j310+v_Na-v_Na);
    ode(q_S000_Na, t) = v_S000_Na;
    ode(q_S010_Na, t) = v_S010_Na;
    ode(q_S100_Na, t) = v_S100_Na;
    ode(q_S110_Na, t) = v_S110_Na;
    ode(q_S200_Na, t) = v_S200_Na;
    ode(q_S210_Na, t) = v_S210_Na;
    ode(q_S300_Na, t) = v_S300_Na;
    ode(q_S310_Na, t) = v_S310_Na;
    ode(q_S001_Na, t) = v_S001_Na;
    ode(q_S011_Na, t) = v_S011_Na;
    ode(q_S101_Na, t) = v_S101_Na;
    ode(q_S111_Na, t) = v_S111_Na;
    ode(q_S201_Na, t) = v_S201_Na;
    ode(q_S211_Na, t) = v_S211_Na;
    ode(q_S301_Na, t) = v_S301_Na;
    ode(q_S311_Na, t) = v_S311_Na;
    v_Na = sel
      case Am_Na == 0{J_per_mol}:
        kappa_Na*(exp(Af_Na/(R*T))-exp(Ar_Na/(R*T)));
      otherwise:
        kappa_Na*Am_Na/(R*T)/(exp(Am_Na/(R*T))-1{dimensionless})*(exp(Af_Na/(R*T))-exp(Ar_Na/(R*T)));
    endsel;
  enddef;
  def map between fast_Na and Na_parameters for
    vars K_000_Na and K_000_Na;
    vars K_001_Na and K_001_Na;
    vars K_010_Na and K_010_Na;
    vars K_011_Na and K_011_Na;
    vars K_100_Na and K_100_Na;
    vars K_101_Na and K_101_Na;
    vars K_110_Na and K_110_Na;
    vars K_111_Na and K_111_Na;
    vars K_200_Na and K_200_Na;
    vars K_201_Na and K_201_Na;
    vars K_210_Na and K_210_Na;
    vars K_211_Na and K_211_Na;
    vars K_300_Na and K_300_Na;
    vars K_301_Na and K_301_Na;
    vars K_310_Na and K_310_Na;
    vars K_311_Na and K_311_Na;
    vars K_Na_o and K_Na_o;
    vars K_Na_i and K_Na_i;
    vars kappa_Na and kappa_Na;
    vars kappa_h000 and kappa_h000;
    vars kappa_h001 and kappa_h001;
    vars kappa_h100 and kappa_h100;
    vars kappa_h101 and kappa_h101;
    vars kappa_h200 and kappa_h200;
    vars kappa_h201 and kappa_h201;
    vars kappa_h300 and kappa_h300;
    vars kappa_h301 and kappa_h301;
    vars kappa_j000 and kappa_j000;
    vars kappa_j010 and kappa_j010;
    vars kappa_j100 and kappa_j100;
    vars kappa_j110 and kappa_j110;
    vars kappa_j200 and kappa_j200;
    vars kappa_j210 and kappa_j210;
    vars kappa_j300 and kappa_j300;
    vars kappa_j310 and kappa_j310;
    vars kappa_m000 and kappa_m000;
    vars kappa_m001 and kappa_m001;
    vars kappa_m010 and kappa_m010;
    vars kappa_m011 and kappa_m011;
    vars kappa_m100 and kappa_m100;
    vars kappa_m101 and kappa_m101;
    vars kappa_m110 and kappa_m110;
    vars kappa_m111 and kappa_m111;
    vars kappa_m200 and kappa_m200;
    vars kappa_m201 and kappa_m201;
    vars kappa_m210 and kappa_m210;
    vars kappa_m211 and kappa_m211;
    vars zNa and zNa;
    vars z_fh and z_fh;
    vars z_fj and z_fj;
    vars z_fm and z_fm;
    vars z_rh and z_rh;
    vars z_rj and z_rj;
    vars z_rm and z_rm;
  enddef;
  def map between fast_Na and environment for
    vars t and t;
    vars R and R;
    vars T and T;
    vars F and F;
    vars C_m and C_m;
    vars q_Na_o and q_Na_o;
    vars q_Na_i and q_Na_i;
    vars q_S000_Na and q_S000_Na;
    vars q_S010_Na and q_S010_Na;
    vars q_S100_Na and q_S100_Na;
    vars q_S110_Na and q_S110_Na;
    vars q_S200_Na and q_S200_Na;
    vars q_S210_Na and q_S210_Na;
    vars q_S300_Na and q_S300_Na;
    vars q_S310_Na and q_S310_Na;
    vars q_S001_Na and q_S001_Na;
    vars q_S011_Na and q_S011_Na;
    vars q_S101_Na and q_S101_Na;
    vars q_S111_Na and q_S111_Na;
    vars q_S201_Na and q_S201_Na;
    vars q_S211_Na and q_S211_Na;
    vars q_S301_Na and q_S301_Na;
    vars q_S311_Na and q_S311_Na;
    vars q_mem and q_mem;
    vars I_mem_Na and I_mem_Na;
    vars v_Na and v_Na;
  enddef;
enddef;
