def model cardiac_AP_NaK_only as
  def import using "units_and_constants/units_BG.cellml" for
    unit mM using unit mM;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit J_per_mol using unit J_per_mol;
    unit fmol_per_sec using unit fmol_per_sec;
    unit C_per_mol using unit C_per_mol;
    unit J_per_C using unit J_per_C;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit fF using unit fF;
    unit fC using unit fC;
    unit fA using unit fA;
  enddef;

  def comp environment as
    var t: second {init: 0, pub: out};
    var R: J_per_K_per_mol {init: 8.314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: C_per_mol {init: 96485, pub: out};
    var C_m: fF {init: 153400, pub: out};
    var q_K_o: fmol {init: 27.9828, pub: out};
    var q_K_i: fmol {init: 5510, pub: out};
    var q_Na_o: fmol {init: 725.48, pub: out};
    var q_Na_i: fmol {init: 380, pub: out};
    var q_H_i: fmol {init: 0.0030534, pub: out};
    var q_MgADP: fmol {init: 1.33, pub: out};
    var q_MgATP: fmol {init: 264.1, pub: out};
    var q_Pi: fmol {init: 15.0898, pub: out};
    var q_P7: fmol {init: 0.001126432, pub: out};
    var q_P14: fmol {init: 0.001126432, pub: out};
    var q_P15: fmol {init: 0.001126432, pub: out};
    var q_P1: fmol {init: 0.001126432, pub: out};
    var q_P2: fmol {init: 0.001126432, pub: out};
    var q_P3: fmol {init: 0.001126432, pub: out};
    var q_P4: fmol {init: 0.001126432, pub: out};
    var q_P5: fmol {init: 0.001126432, pub: out};
    var q_P6: fmol {init: 0.001126432, pub: out};
    var q_P10: fmol {init: 0.001126432, pub: out};
    var q_P11: fmol {init: 0.001126432, pub: out};
    var q_P12: fmol {init: 0.001126432, pub: out};
    var q_P13: fmol {init: 0.001126432, pub: out};
    var q_P8: fmol {init: 0.001126432, pub: out};
    var q_P9: fmol {init: 0.001126432, pub: out};
    var v_K_o_NaK: fmol_per_sec {pub: in};
    var v_K_i_NaK: fmol_per_sec {pub: in};
    var v_Na_o_NaK: fmol_per_sec {pub: in};
    var v_Na_i_NaK: fmol_per_sec {pub: in};
    var v_H_NaK: fmol_per_sec {pub: in};
    var v_MgADP_NaK: fmol_per_sec {pub: in};
    var v_MgATP_NaK: fmol_per_sec {pub: in};
    var v_Pi_NaK: fmol_per_sec {pub: in};
    ode(q_K_o, t) = v_K_o_NaK;
    ode(q_K_i, t) = v_K_i_NaK;
    ode(q_Na_o, t) = v_Na_o_NaK;
    ode(q_Na_i, t) = v_Na_i_NaK;
    ode(q_H_i, t) = v_H_NaK;
    ode(q_MgADP, t) = v_MgADP_NaK;
    ode(q_MgATP, t) = v_MgATP_NaK;
    ode(q_Pi, t) = v_Pi_NaK;
    var q_mem: fC {init: -13039, pub: out};
    var q_mem_mNaK: fA {pub: in};
    ode(q_mem, t) = q_mem_mNaK;
  enddef;

  def comp NaK_parameters as
    var kappa_1_NaK: fmol_per_sec {init: 28701.2, pub: out};
    var kappa_2_NaK: fmol_per_sec {init: 1.02749e+06, pub: out};
    var kappa_3_NaK: fmol_per_sec {init: 36989.9, pub: out};
    var kappa_4_NaK: fmol_per_sec {init: 110769, pub: out};
    var kappa_5_NaK: fmol_per_sec {init: 143.043, pub: out};
    var kappa_6_NaK: fmol_per_sec {init: 0.203578, pub: out};
    var kappa_7_NaK: fmol_per_sec {init: 73.4728, pub: out};
    var kappa_8_NaK: fmol_per_sec {init: 70.4896, pub: out};
    var kappa_9_NaK: fmol_per_sec {init: 19895.6, pub: out};
    var kappa_10_NaK: fmol_per_sec {init: 1.40388e+06, pub: out};
    var kappa_11_NaK: fmol_per_sec {init: 7905.94, pub: out};
    var kappa_12_NaK: fmol_per_sec {init: 6193.15, pub: out};
    var kappa_13_NaK: fmol_per_sec {init: 0.55667, pub: out};
    var kappa_14_NaK: fmol_per_sec {init: 6163.37, pub: out};
    var kappa_15_NaK: fmol_per_sec {init: 1.34489, pub: out};
    var K_1_NaK: per_fmol {init: 1.17033e+06, pub: out};
    var K_2_NaK: per_fmol {init: 8172.83, pub: out};
    var K_3_NaK: per_fmol {init: 228.295, pub: out};
    var K_4_NaK: per_fmol {init: 76.2363, pub: out};
    var K_5_NaK: per_fmol {init: 101.833, pub: out};
    var K_6_NaK: per_fmol {init: 6990.92, pub: out};
    var K_7_NaK: per_fmol {init: 157.403, pub: out};
    var K_8_NaK: per_fmol {init: 494.813, pub: out};
    var K_9_NaK: per_fmol {init: 1.06726e+06, pub: out};
    var K_10_NaK: per_fmol {init: 3781.29, pub: out};
    var K_11_NaK: per_fmol {init: 53.588, pub: out};
    var K_12_NaK: per_fmol {init: 68.4084, pub: out};
    var K_13_NaK: per_fmol {init: 349.31, pub: out};
    var K_14_NaK: per_fmol {init: 105.854, pub: out};
    var K_15_NaK: per_fmol {init: 22775, pub: out};
    var K_K_i: per_fmol {init: 0.000123928, pub: out};
    var K_K_o: per_fmol {init: 0.455493, pub: out};
    var K_Na_i: per_fmol {init: 0.00344241, pub: out};
    var K_Na_o: per_fmol {init: 0.00256511, pub: out};
    var K_MgATP: per_fmol {init: 0.0445571, pub: out};
    var K_MgADP: per_fmol {init: 0.204939, pub: out};
    var K_Pi: per_fmol {init: 2.00757, pub: out};
    var K_H: per_fmol {init: 2.00757, pub: out};
    var zF_5: C_per_mol {init: -5301.979, pub: out};
    var zF_8: C_per_mol {init: -91183.021, pub: out};
  enddef;

  def comp NaK as
    var t: second {pub: in};
    var R: J_per_K_per_mol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mol {pub: in};
    var C_m: fF {pub: in};
    var K_10_NaK: per_fmol {pub: in};
    var K_11_NaK: per_fmol {pub: in};
    var K_12_NaK: per_fmol {pub: in};
    var K_13_NaK: per_fmol {pub: in};
    var K_14_NaK: per_fmol {pub: in};
    var K_15_NaK: per_fmol {pub: in};
    var K_1_NaK: per_fmol {pub: in};
    var K_2_NaK: per_fmol {pub: in};
    var K_3_NaK: per_fmol {pub: in};
    var K_4_NaK: per_fmol {pub: in};
    var K_5_NaK: per_fmol {pub: in};
    var K_6_NaK: per_fmol {pub: in};
    var K_7_NaK: per_fmol {pub: in};
    var K_8_NaK: per_fmol {pub: in};
    var K_9_NaK: per_fmol {pub: in};
    var K_H: per_fmol {pub: in};
    var K_K_o: per_fmol {pub: in};
    var K_K_i: per_fmol {pub: in};
    var K_MgADP: per_fmol {pub: in};
    var K_MgATP: per_fmol {pub: in};
    var K_Na_o: per_fmol {pub: in};
    var K_Na_i: per_fmol {pub: in};
    var K_Pi: per_fmol {pub: in};
    var kappa_10_NaK: fmol_per_sec {pub: in};
    var kappa_11_NaK: fmol_per_sec {pub: in};
    var kappa_12_NaK: fmol_per_sec {pub: in};
    var kappa_13_NaK: fmol_per_sec {pub: in};
    var kappa_14_NaK: fmol_per_sec {pub: in};
    var kappa_15_NaK: fmol_per_sec {pub: in};
    var kappa_1_NaK: fmol_per_sec {pub: in};
    var kappa_2_NaK: fmol_per_sec {pub: in};
    var kappa_3_NaK: fmol_per_sec {pub: in};
    var kappa_4_NaK: fmol_per_sec {pub: in};
    var kappa_5_NaK: fmol_per_sec {pub: in};
    var kappa_6_NaK: fmol_per_sec {pub: in};
    var kappa_7_NaK: fmol_per_sec {pub: in};
    var kappa_8_NaK: fmol_per_sec {pub: in};
    var kappa_9_NaK: fmol_per_sec {pub: in};
    var zF_5: C_per_mol {pub: in};
    var zF_8: C_per_mol {pub: in};
    var q_K_o: fmol {pub: in};
    var q_K_i: fmol {pub: in};
    var q_Na_o: fmol {pub: in};
    var q_Na_i: fmol {pub: in};
    var q_H_i: fmol {pub: in};
    var q_MgADP: fmol {pub: in};
    var q_MgATP: fmol {pub: in};
    var q_Pi: fmol {pub: in};
    var q_P7: fmol {pub: in};
    var q_P14: fmol {pub: in};
    var q_P15: fmol {pub: in};
    var q_P1: fmol {pub: in};
    var q_P2: fmol {pub: in};
    var q_P3: fmol {pub: in};
    var q_P4: fmol {pub: in};
    var q_P5: fmol {pub: in};
    var q_P6: fmol {pub: in};
    var q_P10: fmol {pub: in};
    var q_P11: fmol {pub: in};
    var q_P12: fmol {pub: in};
    var q_P13: fmol {pub: in};
    var q_P8: fmol {pub: in};
    var q_P9: fmol {pub: in};
    var q_mem: fC {pub: in};
    var mu_K_o: J_per_mol;
    var mu_K_i: J_per_mol;
    var mu_Na_o: J_per_mol;
    var mu_Na_i: J_per_mol;
    var mu_H: J_per_mol;
    var mu_MgADP: J_per_mol;
    var mu_MgATP: J_per_mol;
    var mu_P7: J_per_mol;
    var mu_Pi: J_per_mol;
    var mu_P14: J_per_mol;
    var mu_P15: J_per_mol;
    var mu_P1: J_per_mol;
    var mu_P2: J_per_mol;
    var mu_P3: J_per_mol;
    var mu_P4: J_per_mol;
    var mu_P5: J_per_mol;
    var mu_P6: J_per_mol;
    var mu_P10: J_per_mol;
    var mu_P11: J_per_mol;
    var mu_P12: J_per_mol;
    var mu_P13: J_per_mol;
    var mu_P8: J_per_mol;
    var mu_P9: J_per_mol;
    var v_P14: fmol_per_sec;
    var v_P15: fmol_per_sec;
    var v_P1: fmol_per_sec;
    var v_P2: fmol_per_sec;
    var v_P3: fmol_per_sec;
    var v_P4: fmol_per_sec;
    var v_P5: fmol_per_sec;
    var v_P6: fmol_per_sec;
    var v_P10: fmol_per_sec;
    var v_P11: fmol_per_sec;
    var v_P12: fmol_per_sec;
    var v_P13: fmol_per_sec;
    var v_P7: fmol_per_sec;
    var v_P8: fmol_per_sec;
    var v_P9: fmol_per_sec;
    var v_K_o_NaK: fmol_per_sec {pub: out};
    var v_K_i_NaK: fmol_per_sec {pub: out};
    var v_Na_o_NaK: fmol_per_sec {pub: out};
    var v_Na_i_NaK: fmol_per_sec {pub: out};
    var v_H_NaK: fmol_per_sec {pub: out};
    var v_MgADP_NaK: fmol_per_sec {pub: out};
    var v_MgATP_NaK: fmol_per_sec {pub: out};
    var v_Pi_NaK: fmol_per_sec {pub: out};
    var Af_R1: J_per_mol;
    var Ar_R1: J_per_mol;
    var v_R1: fmol_per_sec {pub: out};
    var Af_R10: J_per_mol;
    var Ar_R10: J_per_mol;
    var v_R10: fmol_per_sec {pub: out};
    var Af_R11: J_per_mol;
    var Ar_R11: J_per_mol;
    var v_R11: fmol_per_sec {pub: out};
    var Af_R12: J_per_mol;
    var Ar_R12: J_per_mol;
    var v_R12: fmol_per_sec {pub: out};
    var Af_R13: J_per_mol;
    var Ar_R13: J_per_mol;
    var v_R13: fmol_per_sec {pub: out};
    var Af_R14: J_per_mol;
    var Ar_R14: J_per_mol;
    var v_R14: fmol_per_sec {pub: out};
    var Af_R15: J_per_mol;
    var Ar_R15: J_per_mol;
    var v_R15: fmol_per_sec {pub: out};
    var Af_R2: J_per_mol;
    var Ar_R2: J_per_mol;
    var v_R2: fmol_per_sec {pub: out};
    var Af_R3: J_per_mol;
    var Ar_R3: J_per_mol;
    var v_R3: fmol_per_sec {pub: out};
    var Af_R4: J_per_mol;
    var Ar_R4: J_per_mol;
    var v_R4: fmol_per_sec {pub: out};
    var Af_R5: J_per_mol;
    var Ar_R5: J_per_mol;
    var v_R5: fmol_per_sec {pub: out};
    var Af_R6: J_per_mol;
    var Ar_R6: J_per_mol;
    var v_R6: fmol_per_sec {pub: out};
    var Af_R7: J_per_mol;
    var Ar_R7: J_per_mol;
    var v_R7: fmol_per_sec {pub: out};
    var Af_R8: J_per_mol;
    var Ar_R8: J_per_mol;
    var v_R8: fmol_per_sec {pub: out};
    var Af_R9: J_per_mol;
    var Ar_R9: J_per_mol;
    var v_R9: fmol_per_sec {pub: out};
    var V_mem: volt;
    var I_mem_NaK: fA {pub: out};
    V_mem = q_mem/C_m;
    I_mem_NaK = zF_8*v_R8+zF_5*v_R5;
    mu_H = R*T*ln(K_H*q_H_i);
    mu_K_o = R*T*ln(K_K_o*q_K_o);
    mu_K_i = R*T*ln(K_K_i*q_K_i);
    mu_MgADP = R*T*ln(K_MgADP*q_MgADP);
    mu_MgATP = R*T*ln(K_MgATP*q_MgATP);
    mu_Na_o = R*T*ln(K_Na_o*q_Na_o);
    mu_Na_i = R*T*ln(K_Na_i*q_Na_i);
    mu_P1 = R*T*ln(K_1_NaK*q_P1);
    mu_P10 = R*T*ln(K_10_NaK*q_P10);
    mu_P11 = R*T*ln(K_11_NaK*q_P11);
    mu_P12 = R*T*ln(K_12_NaK*q_P12);
    mu_P13 = R*T*ln(K_13_NaK*q_P13);
    mu_P14 = R*T*ln(K_14_NaK*q_P14);
    mu_P15 = R*T*ln(K_15_NaK*q_P15);
    mu_P2 = R*T*ln(K_2_NaK*q_P2);
    mu_P3 = R*T*ln(K_3_NaK*q_P3);
    mu_P4 = R*T*ln(K_4_NaK*q_P4);
    mu_P5 = R*T*ln(K_5_NaK*q_P5);
    mu_P6 = R*T*ln(K_6_NaK*q_P6);
    mu_P7 = R*T*ln(K_7_NaK*q_P7);
    mu_P8 = R*T*ln(K_8_NaK*q_P8);
    mu_P9 = R*T*ln(K_9_NaK*q_P9);
    mu_Pi = R*T*ln(K_Pi*q_Pi);
    v_R1 = kappa_1_NaK*(exp(Af_R1/(R*T))-exp(Ar_R1/(R*T)));
    v_R10 = kappa_10_NaK*(exp(Af_R10/(R*T))-exp(Ar_R10/(R*T)));
    v_R11 = kappa_11_NaK*(exp(Af_R11/(R*T))-exp(Ar_R11/(R*T)));
    v_R12 = kappa_12_NaK*(exp(Af_R12/(R*T))-exp(Ar_R12/(R*T)));
    v_R13 = kappa_13_NaK*(exp(Af_R13/(R*T))-exp(Ar_R13/(R*T)));
    v_R14 = kappa_14_NaK*(exp(Af_R14/(R*T))-exp(Ar_R14/(R*T)));
    v_R15 = kappa_15_NaK*(exp(Af_R15/(R*T))-exp(Ar_R15/(R*T)));
    v_R2 = kappa_2_NaK*(exp(Af_R2/(R*T))-exp(Ar_R2/(R*T)));
    v_R3 = kappa_3_NaK*(exp(Af_R3/(R*T))-exp(Ar_R3/(R*T)));
    v_R4 = kappa_4_NaK*(exp(Af_R4/(R*T))-exp(Ar_R4/(R*T)));
    v_R5 = kappa_5_NaK*(exp(Af_R5/(R*T))-exp(Ar_R5/(R*T)));
    v_R6 = kappa_6_NaK*(exp(Af_R6/(R*T))-exp(Ar_R6/(R*T)));
    v_R7 = kappa_7_NaK*(exp(Af_R7/(R*T))-exp(Ar_R7/(R*T)));
    v_R8 = kappa_8_NaK*(exp(Af_R8/(R*T))-exp(Ar_R8/(R*T)));
    v_R9 = kappa_9_NaK*(exp(Af_R9/(R*T))-exp(Ar_R9/(R*T)));
    Af_R1 = mu_P1;
    Af_R10 = mu_P10;
    Af_R11 = mu_P11+mu_K_o;
    Af_R12 = mu_P12+mu_K_o;
    Af_R13 = mu_P13;
    Af_R14 = mu_P14+mu_MgATP;
    Af_R15 = mu_P15;
    Af_R2 = mu_P2;
    Af_R3 = mu_P3+mu_Na_i;
    Af_R4 = mu_P4+mu_Na_i;
    Af_R5 = mu_P5+mu_Na_i;
    Af_R6 = mu_P6;
    Af_R7 = mu_P7;
    Af_R8 = mu_P8;
    Af_R9 = mu_P9;
    Ar_R1 = mu_K_i+mu_P2;
    Ar_R10 = mu_Na_o+mu_P11;
    Ar_R11 = mu_P12;
    Ar_R12 = mu_P13;
    Ar_R13 = mu_H+mu_Pi+mu_P14;
    Ar_R14 = mu_P15;
    Ar_R15 = mu_P1;
    Ar_R2 = mu_P3+mu_K_i;
    Ar_R3 = mu_P4;
    Ar_R4 = mu_P5;
    Ar_R5 = R*T*ln(K_6_NaK*q_P6)+zF_5*V_mem;
    Ar_R6 = mu_P7+mu_MgADP;
    Ar_R7 = mu_P8;
    Ar_R8 = zF_8*V_mem+R*T*ln(K_Na_o*q_Na_o)+R*T*ln(K_9_NaK*q_P9);
    Ar_R9 = mu_P10+mu_Na_o;
    v_H_NaK = v_R13;
    v_K_o_NaK = -v_R11-v_R12;
    v_K_i_NaK = v_R1+v_R2;
    v_MgADP_NaK = v_R6;
    v_MgATP_NaK = -v_R14;
    v_Na_o_NaK = v_R8+v_R9+v_R10;
    v_Na_i_NaK = -v_R3-(v_R4+v_R5);
    v_P1 = -v_R1+v_R15;
    v_P10 = v_R9-v_R10;
    v_P11 = v_R10-v_R11;
    v_P12 = -v_R12+v_R11;
    v_P13 = v_R12-v_R13;
    v_P14 = -v_R14+v_R13;
    v_P15 = v_R14-v_R15;
    v_P2 = -v_R2+v_R1;
    v_P3 = v_R2-v_R3;
    v_P4 = v_R3-v_R4;
    v_P5 = v_R4-v_R5;
    v_P6 = v_R5-v_R6;
    v_P7 = v_R6-v_R7;
    v_P8 = -v_R8+v_R7;
    v_P9 = v_R8-v_R9;
    v_Pi_NaK = v_R13;
    ode(q_P7, t) = v_P7;
    ode(q_P14, t) = v_P14;
    ode(q_P15, t) = v_P15;
    ode(q_P1, t) = v_P1;
    ode(q_P2, t) = v_P2;
    ode(q_P3, t) = v_P3;
    ode(q_P4, t) = v_P4;
    ode(q_P5, t) = v_P5;
    ode(q_P6, t) = v_P6;
    ode(q_P10, t) = v_P10;
    ode(q_P11, t) = v_P11;
    ode(q_P12, t) = v_P12;
    ode(q_P13, t) = v_P13;
    ode(q_P8, t) = v_P8;
    ode(q_P9, t) = v_P9;
  enddef;
  def map between NaK and NaK_parameters for
    vars K_10_NaK and K_10_NaK;
    vars K_11_NaK and K_11_NaK;
    vars K_12_NaK and K_12_NaK;
    vars K_13_NaK and K_13_NaK;
    vars K_14_NaK and K_14_NaK;
    vars K_15_NaK and K_15_NaK;
    vars K_1_NaK and K_1_NaK;
    vars K_2_NaK and K_2_NaK;
    vars K_3_NaK and K_3_NaK;
    vars K_4_NaK and K_4_NaK;
    vars K_5_NaK and K_5_NaK;
    vars K_6_NaK and K_6_NaK;
    vars K_7_NaK and K_7_NaK;
    vars K_8_NaK and K_8_NaK;
    vars K_9_NaK and K_9_NaK;
    vars K_H and K_H;
    vars K_K_o and K_K_o;
    vars K_K_i and K_K_i;
    vars K_MgADP and K_MgADP;
    vars K_MgATP and K_MgATP;
    vars K_Na_o and K_Na_o;
    vars K_Na_i and K_Na_i;
    vars K_Pi and K_Pi;
    vars kappa_10_NaK and kappa_10_NaK;
    vars kappa_11_NaK and kappa_11_NaK;
    vars kappa_12_NaK and kappa_12_NaK;
    vars kappa_13_NaK and kappa_13_NaK;
    vars kappa_14_NaK and kappa_14_NaK;
    vars kappa_15_NaK and kappa_15_NaK;
    vars kappa_1_NaK and kappa_1_NaK;
    vars kappa_2_NaK and kappa_2_NaK;
    vars kappa_3_NaK and kappa_3_NaK;
    vars kappa_4_NaK and kappa_4_NaK;
    vars kappa_5_NaK and kappa_5_NaK;
    vars kappa_6_NaK and kappa_6_NaK;
    vars kappa_7_NaK and kappa_7_NaK;
    vars kappa_8_NaK and kappa_8_NaK;
    vars kappa_9_NaK and kappa_9_NaK;
    vars zF_5 and zF_5;
    vars zF_8 and zF_8;
  enddef;
  def map between NaK and environment for
    vars t and t;
    vars R and R;
    vars T and T;
    vars F and F;
    vars C_m and C_m;
    vars q_K_o and q_K_o;
    vars q_K_i and q_K_i;
    vars q_Na_o and q_Na_o;
    vars q_Na_i and q_Na_i;
    vars q_H_i and q_H_i;
    vars q_MgADP and q_MgADP;
    vars q_MgATP and q_MgATP;
    vars q_Pi and q_Pi;
    vars q_P7 and q_P7;
    vars q_P14 and q_P14;
    vars q_P15 and q_P15;
    vars q_P1 and q_P1;
    vars q_P2 and q_P2;
    vars q_P3 and q_P3;
    vars q_P4 and q_P4;
    vars q_P5 and q_P5;
    vars q_P6 and q_P6;
    vars q_P10 and q_P10;
    vars q_P11 and q_P11;
    vars q_P12 and q_P12;
    vars q_P13 and q_P13;
    vars q_P8 and q_P8;
    vars q_P9 and q_P9;
    vars v_K_o_NaK and v_K_o_NaK;
    vars v_K_i_NaK and v_K_i_NaK;
    vars v_Na_o_NaK and v_Na_o_NaK;
    vars v_Na_i_NaK and v_Na_i_NaK;
    vars v_H_NaK and v_H_NaK;
    vars v_MgADP_NaK and v_MgADP_NaK;
    vars v_MgATP_NaK and v_MgATP_NaK;
    vars v_Pi_NaK and v_Pi_NaK;
    vars q_mem and q_mem;
    vars I_mem_NaK and q_mem_mNaK;
  enddef;
enddef;
