def model my_model as
  // BG CVS MVP model
  def unit dim as
    unit dimensionless;
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit L_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit kPa as
    unit joule;
    unit litre {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit L_per_s;
    unit kPa {expo: -1};
  enddef;
  def unit kPa_per_L as
    unit kPa;
    unit litre {expo: -1};
  enddef;
  def unit kPa_s_per_L as
    unit kPa;
    unit L_per_s {expo: -1};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit meter {expo: -5};
  enddef;
  def unit m_per_s2 as
    unit meter;
    unit second {expo: -2};
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;

  def comp main as
    var t: second;
    var rho: Js2_per_m5 {init: 1000};
    var g: m_per_s2 {init: 9.81};
    var theta_deg: dim {init: 90};
    var theta_rad: radian;
    theta_rad = theta_deg*pi/180{dim};
    var z: dim;
    z = sel
      case (t > 100{second}) and (t < 101{second}):
        1{dim};
      otherwise:
        0{dim};
    endsel;
    // Triangular waveform mt with period T. Triangular waveform delayed by a constant is mta
    var T: second {init: 1};
    var mt: dim;
    var mta: dim;
    var delay: dim {init: 0.1};
    var To_pk: dim {init: 0.1};
    mt = t/T-floor(t/T);
    mta = t/T-delay-floor((t-delay*T)/T);
    // Left ventricle
    var q_LV: litre {init: 2.24894867772612};
    var q_LV_us: litre {init: 0.005};
    var u_LV: kPa;
    var E_LV: kPa_per_L;
    var E_LVmax: kPa_per_L {init: 320};
    var E_LVmin: kPa_per_L {init: 6.667};
    E_LV = sel
      case mt < 0.4{dim}:
        (E_LVmax-E_LVmin)*mt/To_pk*exp(0.5{dim}*(1{dim}-sqr(mt/To_pk)))+E_LVmin;
      case mt < 0.6{dim}:
        (E_LVmax-E_LVmin)*0.4{dim}/To_pk*exp(0.5{dim}*(1{dim}-sqr(0.4{dim}/To_pk)))+E_LVmin;
      otherwise:
        E_LVmin;
    endsel;
    ode(q_LV, t) = v_MV-v_AV;
    u_LV = E_LV*(q_LV-q_LV_us);
    // Right ventricle
    var q_RV: litre {init: 2.24212874273495};
    var q_RV_us: litre {init: 0.01};
    var u_RV: kPa;
    var E_RV: kPa_per_L;
    var E_RVmax: kPa_per_L {init: 70};
    var E_RVmin: kPa_per_L {init: 2};
    E_RV = sel
      case mt < 0.4{dim}:
        (E_RVmax-E_RVmin)*mt/To_pk*exp(0.5{dim}*(1{dim}-sqr(mt/To_pk)))+E_RVmin;
      case mt < 0.6{dim}:
        (E_RVmax-E_RVmin)*0.4{dim}/To_pk*exp(0.5{dim}*(1{dim}-sqr(0.4{dim}/To_pk)))+E_RVmin;
      otherwise:
        E_RVmin;
    endsel;
    ode(q_RV, t) = v_TV-v_PV;
    u_RV = E_RV*(q_RV-q_RV_us);
    // Left atrium
    var q_LA: litre {init: 1.50038322871398};
    var q_LA_us: litre {init: 0.004};
    var u_LA: kPa;
    var E_LA: kPa_per_L {init: 10};
    ode(q_LA, t) = v_pulmV-v_MV;
    u_LA = E_LA*(q_LA-q_LA_us);
    // Right atrium
    var q_RA: litre {init: 0.582873822068968};
    var q_RA_us: litre {init: 0.004};
    var u_RA: kPa;
    var E_RA: kPa_per_L {init: 10};
    ode(q_RA, t) = v_headV+v_lArmV+v_rArmV+v_V1-v_TV;
    u_RA = E_RA*(q_RA-q_RA_us);
    // Aortic valve
    var v_AV: L_per_s;
    var R_AV: kPa_s_per_L {init: 1};
    v_AV = sel
      case u_LV > u_AA:
        (u_LV-u_AA)/R_AV;
      otherwise:
        0{L_per_s};
    endsel;
    // Pulmonary Valve
    var v_PV: L_per_s;
    var R_PV: kPa_s_per_L {init: 1};
    v_PV = sel
      case u_RV > u_pulmA:
        (u_RV-u_pulmA)/R_PV;
      otherwise:
        0{L_per_s};
    endsel;
    // Tricuspid Valve
    var v_TV: L_per_s;
    var R_TV: kPa_s_per_L {init: 1};
    v_TV = sel
      case u_RA > u_RV:
        (u_RA-u_RV)/R_TV;
      otherwise:
        0{L_per_s};
    endsel;
    // Mitral Valve
    var v_MV: L_per_s;
    var R_MV: kPa_s_per_L {init: 1};
    v_MV = sel
      case u_LA > u_LV:
        (u_LA-u_LV)/R_MV;
      otherwise:
        0{L_per_s};
    endsel;
    // Lungs
    var q_pulmA: litre {init: 0.274822042097049};
    var q_pulmA_us: litre {init: 0.2};
    var u_pulmA: kPa;
    var E_pulmA: kPa_per_L {init: 200};
    ode(q_pulmA, t) = v_PV-v_lungA;
    u_pulmA = E_pulmA*(q_pulmA-q_pulmA_us);
    var v_lungA: L_per_s;
    var R_lungA: kPa_s_per_L {init: 1};
    v_lungA = (u_pulmA-u_lungC)/R_lungA;
    var q_lungC: litre {init: 0.274821056256821};
    var q_lungC_us: litre {init: 0.2};
    var u_lungC: kPa;
    var E_lungC: kPa_per_L {init: 200};
    ode(q_lungC, t) = v_lungA-v_pulmV;
    u_lungC = E_lungC*(q_lungC-q_lungC_us);
    var v_pulmV: L_per_s;
    var R_pulmV: kPa_s_per_L {init: 1};
    v_pulmV = (u_lungC-u_LA)/R_pulmV;
    // Ascending aorta
    var q_AA: litre {init: 1.43716360225001};
    var q_AA_us: litre {init: 0.12};
    var u_AA: kPa;
    var E_AA: kPa_per_L {init: 80};
    ode(q_AA, t) = v_AV-v_A1-v_brachiocephalicA-v_lCCA-v_lSubclavianA;
    u_AA = E_AA*(q_AA-q_AA_us);
    // Head and neck
    var v_brachiocephalicA: L_per_s;
    var R_brachiocephalicA: kPa_s_per_L {init: 100};
    v_brachiocephalicA = (u_AA-u_brachiocephalicA)/R_brachiocephalicA;
    var q_brachiocephalicA: litre {init: 0.658321340279823};
    var q_brachiocephalicA_us: litre {init: 0.2};
    var u_brachiocephalicA: kPa;
    var E_brachiocephalicA: kPa_per_L {init: 200};
    ode(q_brachiocephalicA, t) = v_brachiocephalicA-v_rSubclavianA-v_rCCA;
    u_brachiocephalicA = E_brachiocephalicA*(q_brachiocephalicA-q_brachiocephalicA_us);
    var v_rSubclavianA: L_per_s;
    var R_rSubclavianA: kPa_s_per_L {init: 100};
    v_rSubclavianA = (u_brachiocephalicA-u_rSubclavianA)/R_rSubclavianA;
    var v_rCCA: L_per_s;
    var R_rCCA: kPa_s_per_L {init: 100};
    v_rCCA = (u_brachiocephalicA-u_headC)/R_rCCA;
    var q_rSubclavianA: litre {init: 0.578637981993128};
    var q_rSubclavianA_us: litre {init: 0.2};
    var u_rSubclavianA: kPa;
    var E_rSubclavianA: kPa_per_L {init: 200};
    ode(q_rSubclavianA, t) = v_rSubclavianA-v_rBrachialA-v_rVertebralA;
    u_rSubclavianA = E_rSubclavianA*(q_rSubclavianA-q_rSubclavianA_us);
    var v_rBrachialA: L_per_s;
    var R_rBrachialA: kPa_s_per_L {init: 100};
    v_rBrachialA = (u_rSubclavianA-u_rArmC)/R_rBrachialA;
    var v_rVertebralA: L_per_s;
    var R_rVertebralA: kPa_s_per_L {init: 100};
    v_rVertebralA = (u_rSubclavianA-u_headC)/R_rVertebralA;
    var v_lCCA: L_per_s;
    var R_lCCA: kPa_s_per_L {init: 100};
    v_lCCA = (u_AA-u_headC)/R_lCCA;
    var v_lSubclavianA: L_per_s;
    var R_lSubclavianA: kPa_s_per_L {init: 100};
    v_lSubclavianA = (u_AA-u_lSubclavianA)/R_lSubclavianA;
    var q_lSubclavianA: litre {init: 0.609560299960373};
    var q_lSubclavianA_us: litre {init: 0.2};
    var u_lSubclavianA: kPa;
    var E_lSubclavianA: kPa_per_L {init: 200};
    ode(q_lSubclavianA, t) = v_lSubclavianA-v_lBrachialA-v_lVertebralA;
    u_lSubclavianA = E_lSubclavianA*(q_lSubclavianA-q_lSubclavianA_us);
    var v_lBrachialA: L_per_s;
    var R_lBrachialA: kPa_s_per_L {init: 100};
    v_lBrachialA = (u_lSubclavianA-u_lArmC)/R_lBrachialA;
    var v_lVertebralA: L_per_s;
    var R_lVertebralA: kPa_s_per_L {init: 100};
    v_lVertebralA = (u_lSubclavianA-u_headC)/R_lVertebralA;
    var q_headC: litre {init: 0.575700923676085};
    var q_headC_us: litre {init: 0.2};
    var u_headC: kPa;
    var E_headC: kPa_per_L {init: 200};
    ode(q_headC, t) = v_rVertebralA+v_rCCA+v_lCCA+v_lVertebralA-v_headV;
    u_headC = E_headC*(q_headC-q_headC_us);
    var v_headV: L_per_s;
    var R_headV: kPa_s_per_L {init: 100};
    v_headV = (u_headC-u_RA)/R_headV;
    // Left arm
    var q_lArmC: litre {init: 0.380415025779693};
    var q_lArmC_us: litre {init: 0.06};
    var u_lArmC: kPa;
    var E_lArmC: kPa_per_L {init: 150};
    ode(q_lArmC, t) = v_lBrachialA-v_lArmV;
    u_lArmC = E_lArmC*(q_lArmC-q_lArmC_us);
    var v_lArmV: L_per_s;
    var R_lArmV: kPa_s_per_L {init: 100};
    v_lArmV = (u_lArmC-u_RA)/R_lArmV;
    // Right arm
    var q_rArmC: litre {init: 0.380415025779692};
    var q_rArmC_us: litre {init: 0.06};
    var u_rArmC: kPa;
    var E_rArmC: kPa_per_L {init: 150};
    ode(q_rArmC, t) = v_rBrachialA-v_rArmV;
    u_rArmC = E_rArmC*(q_rArmC-q_rArmC_us);
    var v_rArmV: L_per_s;
    var R_rArmV: kPa_s_per_L {init: 100};
    v_rArmV = (u_rArmC-u_RA)/R_rArmV;
    // Descending aorta
    var q_A1: litre {init: 0.0726453866278764};
    var q_A1_us: litre {init: 0.06};
    var q_A2: litre {init: 0.0722595904606296};
    var q_A2_us: litre {init: 0.06};
    var q_A3: litre {init: 0.0717727262354559};
    var q_A3_us: litre {init: 0.06};
    var q_A4: litre {init: 0.0715328891139091};
    var q_A4_us: litre {init: 0.06};
    var q_A5: litre {init: 0.0714293557557069};
    var q_A5_us: litre {init: 0.06};
    var q_A6: litre {init: 0.0713497500336812};
    var q_A6_us: litre {init: 0.06};
    var q_A7: litre {init: 0.0712949341825069};
    var q_A7_us: litre {init: 0.06};
    var q_A8: litre {init: 0.0712201889071758};
    var q_A8_us: litre {init: 0.06};
    var v_A1: L_per_s;
    var v_A2: L_per_s;
    var v_A3: L_per_s;
    var v_A4: L_per_s;
    var v_A5: L_per_s;
    var v_A6: L_per_s;
    var v_A7: L_per_s;
    var v_A8: L_per_s;
    ode(q_A1, t) = v_A1-v_A2-v_lInfPhrenicA;
    ode(q_A2, t) = v_A2-v_A3-v_rInfPhrenicA;
    ode(q_A3, t) = v_A3-v_A4-v_celiacA;
    ode(q_A4, t) = v_A4-v_A5-v_supMesA;
    ode(q_A5, t) = v_A5-v_A6-v_lRenalA;
    ode(q_A6, t) = v_A6-v_A7-v_rRenalA;
    ode(q_A7, t) = v_A7-v_A8-v_infMesA;
    ode(q_A8, t) = v_A8-v_lCommonIliacA-v_rCommonIliacA;
    var u_A1: kPa;
    var u_A2: kPa;
    var u_A3: kPa;
    var u_A4: kPa;
    var u_A5: kPa;
    var u_A6: kPa;
    var u_A7: kPa;
    var u_A8: kPa;
    var E_A1: kPa_per_L {init: 400};
    var E_A2: kPa_per_L {init: 400};
    var E_A3: kPa_per_L {init: 400};
    var E_A4: kPa_per_L {init: 400};
    var E_A5: kPa_per_L {init: 400};
    var E_A6: kPa_per_L {init: 400};
    var E_A7: kPa_per_L {init: 400};
    var E_A8: kPa_per_L {init: 400};
    u_A1 = E_A1*(q_A1-q_A1_us);
    u_A2 = E_A2*(q_A2-q_A2_us);
    u_A3 = E_A3*(q_A3-q_A3_us);
    u_A4 = E_A4*(q_A4-q_A4_us);
    u_A5 = E_A5*(q_A5-q_A5_us);
    u_A6 = E_A6*(q_A6-q_A6_us);
    u_A7 = E_A7*(q_A7-q_A7_us);
    u_A8 = E_A8*(q_A8-q_A8_us);
    var R_A1: kPa_s_per_L {init: 10000000};
    var R_A2: kPa_s_per_L {init: 100};
    var R_A3: kPa_s_per_L {init: 100};
    var R_A4: kPa_s_per_L {init: 100};
    var R_A5: kPa_s_per_L {init: 100};
    var R_A6: kPa_s_per_L {init: 100};
    var R_A7: kPa_s_per_L {init: 100};
    var R_A8: kPa_s_per_L {init: 100};
    v_A1 = (u_AA-u_A1)/R_A1;
    v_A2 = (u_A1-u_A2)/R_A2;
    v_A3 = (u_A2-u_A3)/R_A3;
    v_A4 = (u_A3-u_A4)/R_A4;
    v_A5 = (u_A4-u_A5)/R_A5;
    v_A6 = (u_A5-u_A6)/R_A6;
    v_A7 = (u_A6-u_A7)/R_A7;
    v_A8 = (u_A7-u_A8)/R_A8;
    // Left phrenic branch of the aorta
    var v_lInfPhrenicA: L_per_s;
    var R_lInfPhrenicA: kPa_s_per_L {init: 100};
    v_lInfPhrenicA = (u_A1-u_lAdrenalGlandC)/R_lInfPhrenicA;
    var q_lAdrenalGlandC: litre {init: 0.226013520134949};
    var q_lAdrenalGlandC_us: litre {init: 0.2};
    var u_lAdrenalGlandC: kPa;
    var E_lAdrenalGlandC: kPa_per_L {init: 200};
    ode(q_lAdrenalGlandC, t) = v_lInfPhrenicA-v_lAdrenalV;
    u_lAdrenalGlandC = E_lAdrenalGlandC*(q_lAdrenalGlandC-q_lAdrenalGlandC_us);
    var v_lAdrenalV: L_per_s;
    var R_lAdrenalV: kPa_s_per_L {init: 100};
    v_lAdrenalV = (u_lAdrenalGlandC-u_lInfPhrenicV)/R_lAdrenalV;
    var q_lInfPhrenicV: litre {init: 0.226425525942081};
    var q_lInfPhrenicV_us: litre {init: 0.2};
    var u_lInfPhrenicV: kPa;
    var E_lInfPhrenicV: kPa_per_L {init: 200};
    ode(q_lInfPhrenicV, t) = v_lAdrenalV-v_lInfPhrenicV;
    u_lInfPhrenicV = E_lInfPhrenicV*(q_lInfPhrenicV-q_lInfPhrenicV_us);
    var v_lInfPhrenicV: L_per_s;
    var R_lInfPhrenicV: kPa_s_per_L {init: 100};
    v_lInfPhrenicV = (u_lInfPhrenicV-u_V1)/R_lInfPhrenicV;
    // Right phrenic branch of the aorta
    var v_rInfPhrenicA: L_per_s;
    var R_rInfPhrenicA: kPa_s_per_L {init: 100};
    v_rInfPhrenicA = (u_A2-u_rAdrenalGlandC)/R_rInfPhrenicA;
    var q_rAdrenalGlandC: litre {init: 0.224729694488936};
    var q_rAdrenalGlandC_us: litre {init: 0.2};
    var u_rAdrenalGlandC: kPa;
    var E_rAdrenalGlandC: kPa_per_L {init: 200};
    ode(q_rAdrenalGlandC, t) = v_rInfPhrenicA-v_rAdrenalV;
    u_rAdrenalGlandC = E_rAdrenalGlandC*(q_rAdrenalGlandC-q_rAdrenalGlandC_us);
    var v_rAdrenalV: L_per_s;
    var R_rAdrenalV: kPa_s_per_L {init: 100};
    v_rAdrenalV = (u_rAdrenalGlandC-u_rInfPhrenicV)/R_rAdrenalV;
    var q_rInfPhrenicV: litre {init: 0.224899115493557};
    var q_rInfPhrenicV_us: litre {init: 0.2};
    var u_rInfPhrenicV: kPa;
    var E_rInfPhrenicV: kPa_per_L {init: 200};
    ode(q_rInfPhrenicV, t) = v_rAdrenalV-v_rInfPhrenicV;
    u_rInfPhrenicV = E_rInfPhrenicV*(q_rInfPhrenicV-q_rInfPhrenicV_us);
    var v_rInfPhrenicV: L_per_s;
    var R_rInfPhrenicV: kPa_s_per_L {init: 100};
    v_rInfPhrenicV = (u_rInfPhrenicV-u_V2)/R_rInfPhrenicV;
    // Celiac branch of the aorta
    var v_celiacA: L_per_s;
    var R_celiacA: kPa_s_per_L {init: 100};
    v_celiacA = (u_A3-u_celiacA)/R_celiacA;
    var q_celiacA: litre {init: 0.0715428919998289};
    var q_celiacA_us: litre {init: 0.06};
    var u_celiacA: kPa;
    var E_celiacA: kPa_per_L {init: 400};
    var z_celiacA: meter {init: 0.2};
    ode(q_celiacA, t) = v_celiacA-v_liverA-v_stomachA-v_spleenA-v_pancreas1A;
    u_celiacA = E_celiacA*(q_celiacA-q_celiacA_us);
    // Superior mesentery branch of the aorta
    var v_supMesA: L_per_s;
    var R_supMesA: kPa_s_per_L {init: 100};
    v_supMesA = (u_A4-u_supMesA)/R_supMesA;
    var q_supMesA: litre {init: 0.071414457768405};
    var q_supMesA_us: litre {init: 0.06};
    var u_supMesA: kPa;
    var E_supMesA: kPa_per_L {init: 400};
    var z_supMesA: meter {init: 0.2};
    ode(q_supMesA, t) = v_supMesA-v_pancreas2A-v_intestineA-v_colonA;
    u_supMesA = E_supMesA*(q_supMesA-q_supMesA_us);
    // Left renal branch of the aorta
    var v_lRenalA: L_per_s;
    var R_lRenalA: kPa_s_per_L {init: 100};
    v_lRenalA = (u_A5-u_lGlomerulusC)/R_lRenalA;
    var q_lGlomerulusC: litre {init: 0.222843940557744};
    var q_lGlomerulusC_us: litre {init: 0.2};
    var u_lGlomerulusC: kPa;
    var E_lGlomerulusC: kPa_per_L {init: 200};
    ode(q_lGlomerulusC, t) = v_lRenalA-v_lEffArteriol;
    u_lGlomerulusC = E_lGlomerulusC*(q_lGlomerulusC-q_lGlomerulusC_us);
    var v_lEffArteriol: L_per_s;
    var R_lEffArteriol: kPa_s_per_L {init: 100};
    v_lEffArteriol = (u_lGlomerulusC-u_lPeritubularC)/R_lEffArteriol;
    var q_lPeritubularC: litre {init: 0.222892809988734};
    var q_lPeritubularC_us: litre {init: 0.2};
    var u_lPeritubularC: kPa;
    var E_lPeritubularC: kPa_per_L {init: 200};
    ode(q_lPeritubularC, t) = v_lEffArteriol-v_lRenalV;
    u_lPeritubularC = E_lPeritubularC*(q_lPeritubularC-q_lPeritubularC_us);
    var v_lRenalV: L_per_s;
    var R_lRenalV: kPa_s_per_L {init: 100};
    v_lRenalV = (u_lPeritubularC-u_V4)/R_lRenalV;
    // Right renal branch of the aorta
    var v_rRenalA: L_per_s;
    var R_rRenalA: kPa_s_per_L {init: 100};
    v_rRenalA = (u_A6-u_rGlomerulusC)/R_rRenalA;
    var q_rGlomerulusC: litre {init: 0.222680450943523};
    var q_rGlomerulusC_us: litre {init: 0.2};
    var u_rGlomerulusC: kPa;
    var E_rGlomerulusC: kPa_per_L {init: 200};
    ode(q_rGlomerulusC, t) = v_rRenalA-v_rEffArteriol;
    u_rGlomerulusC = E_rGlomerulusC*(q_rGlomerulusC-q_rGlomerulusC_us);
    var v_rEffArteriol: L_per_s;
    var R_rEffArteriol: kPa_s_per_L {init: 100};
    v_rEffArteriol = (u_rGlomerulusC-u_rPeritubularC)/R_rEffArteriol;
    var q_rPeritubularC: litre {init: 0.222721287850087};
    var q_rPeritubularC_us: litre {init: 0.2};
    var u_rPeritubularC: kPa;
    var E_rPeritubularC: kPa_per_L {init: 200};
    ode(q_rPeritubularC, t) = v_rEffArteriol-v_rRenalV;
    u_rPeritubularC = E_rPeritubularC*(q_rPeritubularC-q_rPeritubularC_us);
    var v_rRenalV: L_per_s;
    var R_rRenalV: kPa_s_per_L {init: 100};
    v_rRenalV = (u_rPeritubularC-u_V5)/R_rRenalV;
    // Inferior mesentery branch of the aorta
    var v_infMesA: L_per_s;
    var R_infMesA: kPa_s_per_L {init: 100};
    v_infMesA = (u_A7-u_colonC)/R_infMesA;
    // Stomach
    var v_stomachA: L_per_s;
    var R_stomachA: kPa_s_per_L {init: 100};
    v_stomachA = (u_celiacA-u_stomachC)/R_stomachA;
    var q_stomachC: litre {init: 0.105910755847991};
    var q_stomachC_us: litre {init: 0.06};
    var u_stomachC: kPa;
    var E_stomachC: kPa_per_L {init: 100};
    var z_stomachC: meter {init: 0.2};
    ode(q_stomachC, t) = v_stomachA-v_stomachV;
    u_stomachC = E_stomachC*(q_stomachC-q_stomachC_us);
    var v_stomachV: L_per_s;
    var R_stomachV: kPa_s_per_L {init: 2400};
    v_stomachV = (u_stomachC-u_portalV)/R_stomachV;
    // Spleen
    var v_spleenA: L_per_s;
    var R_spleenA: kPa_s_per_L {init: 100};
    v_spleenA = (u_celiacA-u_spleenC)/R_spleenA;
    var q_spleenC: litre {init: 0.105910034847806};
    var q_spleenC_us: litre {init: 0.06};
    var u_spleenC: kPa;
    var E_spleenC: kPa_per_L {init: 100};
    var z_spleenC: meter {init: 0.2};
    ode(q_spleenC, t) = v_spleenA-v_spleenV;
    u_spleenC = E_spleenC*(q_spleenC-q_spleenC_us);
    var v_spleenV: L_per_s;
    var R_spleenV: kPa_s_per_L {init: 3000};
    v_spleenV = (u_spleenC-u_portalV)/R_spleenV;
    // Pancreas
    var v_pancreas1A: L_per_s;
    var v_pancreas2A: L_per_s;
    var R_pancreas1A: kPa_s_per_L {init: 100};
    var R_pancreas2A: kPa_s_per_L {init: 100};
    v_pancreas1A = (u_celiacA-u_pancreasC)/R_pancreas1A;
    v_pancreas2A = (u_supMesA-u_pancreasC)/R_pancreas2A;
    var q_pancreasC: litre {init: 0.105787155209054};
    var q_pancreasC_us: litre {init: 0.06};
    var u_pancreasC: kPa;
    var E_pancreasC: kPa_per_L {init: 100};
    var z_pancreasC: meter {init: 0.2};
    ode(q_pancreasC, t) = v_pancreas1A+v_pancreas2A-v_pancreasV;
    u_pancreasC = E_pancreasC*(q_pancreasC-q_pancreasC_us);
    var v_pancreasV: L_per_s;
    var R_pancreasV: kPa_s_per_L {init: 4000};
    v_pancreasV = (u_pancreasC-u_portalV)/R_pancreasV;
    // Intestine
    var v_intestineA: L_per_s;
    var R_intestineA: kPa_s_per_L {init: 100};
    v_intestineA = (u_supMesA-u_intestineC)/R_intestineA;
    var q_intestineC: litre {init: 0.105459895332545};
    var q_intestineC_us: litre {init: 0.06};
    var u_intestineC: kPa;
    var E_intestineC: kPa_per_L {init: 100};
    var z_: meter {init: 0.2};
    ode(q_intestineC, t) = v_intestineA-v_intestineV;
    u_intestineC = E_intestineC*(q_intestineC-q_intestineC_us);
    var v_intestineV: L_per_s;
    var R_intestineV: kPa_s_per_L {init: 1200};
    v_intestineV = (u_intestineC-u_portalV)/R_intestineV;
    // Colon
    var v_colonA: L_per_s;
    var R_colonA: kPa_s_per_L {init: 100};
    v_colonA = (u_supMesA-u_colonC)/R_colonA;
    var q_colonC: litre {init: 0.105317375726849};
    var q_colonC_us: litre {init: 0.06};
    var u_colonC: kPa;
    var E_colonC: kPa_per_L {init: 100};
    var z_colonC: meter {init: 0.2};
    ode(q_colonC, t) = v_colonA+v_infMesA-v_colonV;
    u_colonC = E_colonC*(q_colonC-q_colonC_us);
    var v_colonV: L_per_s;
    var R_colonV: kPa_s_per_L {init: 2000};
    v_colonV = (u_colonC-u_portalV)/R_colonV;
    // Portal vein
    var q_portalV: litre {init: 0.152013945600315};
    var q_portalV_us: litre {init: 0.06};
    var u_portalV: kPa;
    var E_portalV: kPa_per_L {init: 50};
    var z_portalV: meter {init: 0.2};
    ode(q_portalV, t) = v_stomachV+v_spleenV+v_pancreasV+v_intestineV+v_colonV-v_portalV;
    u_portalV = E_portalV*(q_portalV-q_portalV_us);
    var v_portalV: L_per_s;
    var R_portalV: kPa_s_per_L {init: 100};
    v_portalV = (u_portalV-u_liverC)/R_portalV;
    // Liver
    var v_liverA: L_per_s;
    var R_liverA: kPa_s_per_L {init: 800};
    v_liverA = (u_celiacA-u_liverC)/R_liverA;
    var q_liverC: litre {init: 0.526188169704937};
    var q_liverC_us: litre {init: 0.06};
    var u_liverC: kPa;
    var E_liverC: kPa_per_L {init: 10};
    var z_liverC: meter {init: -0.5};
    ode(q_liverC, t) = v_liverA+v_portalV-v_liverV;
    u_liverC = E_liverC*(q_liverC-q_liverC_us);
    var v_liverV: L_per_s;
    var R_liverV: kPa_s_per_L {init: 1};
    v_liverV = (u_liverC-u_V3)/R_liverV;
    // Inferior vena cava
    var q_V1: litre {init: 0.0732527312969717};
    var q_V1_us: litre {init: 0.06};
    var q_V2: litre {init: 0.0724355014489091};
    var q_V2_us: litre {init: 0.06};
    var q_V3: litre {init: 0.0716607456049039};
    var q_V3_us: litre {init: 0.06};
    var q_V4: litre {init: 0.071501504166401};
    var q_V4_us: litre {init: 0.06};
    var q_V5: litre {init: 0.0714111536200381};
    var q_V5_us: litre {init: 0.06};
    var q_V6: litre {init: 0.0713861207574313};
    var q_V6_us: litre {init: 0.06};
    var v_V1: L_per_s;
    var v_V2: L_per_s;
    var v_V3: L_per_s;
    var v_V4: L_per_s;
    var v_V5: L_per_s;
    var v_V6: L_per_s;
    ode(q_V1, t) = v_V2+v_lInfPhrenicV-v_V1;
    ode(q_V2, t) = v_V3+v_rInfPhrenicV-v_V2;
    ode(q_V3, t) = v_V4+v_liverV-v_V3;
    ode(q_V4, t) = v_V5+v_lRenalV-v_V4;
    ode(q_V5, t) = v_V6+v_rRenalV-v_V5;
    ode(q_V6, t) = v_lCommonIliacV+v_rCommonIliacV-v_V6;
    var u_V1: kPa;
    var u_V2: kPa;
    var u_V3: kPa;
    var u_V4: kPa;
    var u_V5: kPa;
    var u_V6: kPa;
    var E_V1: kPa_per_L {init: 400};
    var E_V2: kPa_per_L {init: 400};
    var E_V3: kPa_per_L {init: 400};
    var E_V4: kPa_per_L {init: 400};
    var E_V5: kPa_per_L {init: 400};
    var E_V6: kPa_per_L {init: 400};
    u_V1 = E_V1*(q_V1-q_V1_us);
    u_V2 = E_V2*(q_V2-q_V2_us);
    u_V3 = E_V3*(q_V3-q_V3_us);
    u_V4 = E_V4*(q_V4-q_V4_us);
    u_V5 = E_V5*(q_V5-q_V5_us);
    u_V6 = E_V6*(q_V6-q_V6_us);
    var R_V1: kPa_s_per_L {init: 100};
    var R_V2: kPa_s_per_L {init: 100};
    var R_V3: kPa_s_per_L {init: 100};
    var R_V4: kPa_s_per_L {init: 100};
    var R_V5: kPa_s_per_L {init: 100};
    var R_V6: kPa_s_per_L {init: 100};
    v_V1 = (u_V1-u_RA)/R_V1;
    v_V2 = (u_V2-u_V1)/R_V2;
    v_V3 = (u_V3-u_V2)/R_V3;
    v_V4 = (u_V4-u_V3)/R_V4;
    v_V5 = (u_V5-u_V4)/R_V5;
    v_V6 = (u_V6-u_V5)/R_V6;
    // Left leg
    var v_lCommonIliacA: L_per_s;
    var R_lCommonIliacA: kPa_s_per_L {init: 100};
    v_lCommonIliacA = (u_A8-u_lLegC)/R_lCommonIliacA;
    var q_lLegC: litre {init: 0.0898390162613648};
    var q_lLegC_us: litre {init: 0.06};
    var u_lLegC: kPa;
    var E_lLegC: kPa_per_L {init: 150};
    ode(q_lLegC, t) = v_lCommonIliacA-v_lCommonIliacV;
    u_lLegC = E_lLegC*(q_lLegC-q_lLegC_us);
    var v_lCommonIliacV: L_per_s;
    var R_lCommonIliacV: kPa_s_per_L {init: 4000};
    v_lCommonIliacV = (u_lLegC-u_V6)/R_lCommonIliacV;
    // Right leg
    var v_rCommonIliacA: L_per_s;
    var R_rCommonIliacA: kPa_s_per_L {init: 100};
    v_rCommonIliacA = (u_A8-u_rLegC)/R_rCommonIliacA;
    var q_rLegC: litre {init: 0.0898390162613648};
    var q_rLegC_us: litre {init: 0.06};
    var u_rLegC: kPa;
    var E_rLegC: kPa_per_L {init: 150};
    ode(q_rLegC, t) = v_rCommonIliacA-v_rCommonIliacV;
    u_rLegC = E_rLegC*(q_rLegC-q_rLegC_us);
    var v_rCommonIliacV: L_per_s;
    var R_rCommonIliacV: kPa_s_per_L {init: 4000};
    v_rCommonIliacV = (u_rLegC-u_V6)/R_rCommonIliacV;
    // Total volumes of blood in regions
    var q_TotHeart: litre;
    var q_TotLung: litre;
    var q_TotHead: litre;
    var q_TotThoracic: litre;
    var q_TotAorta: litre;
    var q_TotRenal: litre;
    var q_TotGut: litre;
    var q_TotVenaCava: litre;
    var q_TotLimbs: litre;
    var q_TotBlood: litre;
    q_TotHeart = q_RA+q_RV+q_LA+q_LV;
    q_TotLung = q_lungC+q_pulmA;
    q_TotHead = q_brachiocephalicA+q_rSubclavianA+q_lSubclavianA+q_headC;
    q_TotThoracic = q_lAdrenalGlandC+q_lInfPhrenicV+q_rAdrenalGlandC+q_rInfPhrenicV;
    q_TotAorta = q_AA+q_A1+q_A2+q_A3+q_A4+q_A5+q_A6+q_A7+q_A8;
    q_TotRenal = q_lGlomerulusC+q_lPeritubularC+q_rGlomerulusC+q_rPeritubularC;
    q_TotGut = q_celiacA+q_supMesA+q_stomachC+q_spleenC+q_pancreasC+q_intestineC+q_colonC+q_portalV+q_liverC;
    q_TotVenaCava = q_V1+q_V2+q_V3+q_V4+q_V5+q_V6;
    q_TotLimbs = q_lArmC+q_rArmC+q_lLegC+q_rLegC;
    q_TotBlood = q_TotHeart+q_TotLung+(+q_TotHead)+q_TotThoracic+q_TotAorta+q_TotRenal+q_TotGut+q_TotVenaCava+q_TotLimbs;
  enddef;
enddef;
