def model CaL_module as
  def import using "units_and_constants/units_BG.cellml" for
    unit mM using unit mM;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit J_per_mol using unit J_per_mol;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit fmol_per_sec using unit fmol_per_sec;
    unit C_per_mol using unit C_per_mol;
    unit J_per_C using unit J_per_C;
    unit microm3 using unit microm3;
    unit fF using unit fF;
    unit fC using unit fC;
    unit fA using unit fA;
    unit per_second using unit per_second;
    unit millivolt using unit millivolt;
  enddef;
  def import using "units_and_constants/constants_BG.cellml" for
    comp constants using comp constants;
  enddef;

  def comp environment as
    var t: second {init: 0, pub: out};
    var C_m: fF {init: 60000, pub: out};
    var q_Ca_o: fmol {init: 0.245463158, pub: out};
    var q_Ca_i: fmol {init: 6e-5, pub: out};
    var q_K_o: fmol {init: 27.9828, pub: out};
    var q_K_i: fmol {init: 5510, pub: out};
    var q_S000_LCC: fmol {init: 5.30481E-08, pub: out};
    var q_S010_LCC: fmol {init: 1.05036E-05, pub: out};
    var q_S020_LCC: fmol {init: 5.30481E-08, pub: out};
    var q_S100_LCC: fmol {init: 5.35845E-10, pub: out};
    var q_S110_LCC: fmol {init: 1.06098E-07, pub: out};
    var q_S120_LCC: fmol {init: 5.35845E-10, pub: out};
    var q_S001_LCC: fmol {init: 5.89425E-09, pub: out};
    var q_S011_LCC: fmol {init: 1.16708E-06, pub: out};
    var q_S021_LCC: fmol {init: 5.89425E-09, pub: out};
    var q_S101_LCC: fmol {init: 5.95377E-11, pub: out};
    var q_S111_LCC: fmol {init: 1.17886E-08, pub: out};
    var q_S121_LCC: fmol {init: 5.95377E-11, pub: out};
    var q_mem: fC {init: -13039, pub: out};
    var I_mem_LCC: fA {pub: in};
    var v_Ca_o_LCC: fmol_per_sec {pub: in};
    var v_Ca_i_LCC: fmol_per_sec {pub: in};
    var v_K_o_LCC: fmol_per_sec {pub: in};
    var v_K_i_LCC: fmol_per_sec {pub: in};
    ode(q_Ca_o, t) = v_Ca_o_LCC;
    ode(q_Ca_i, t) = v_Ca_i_LCC;
    ode(q_K_o, t) = v_K_o_LCC;
    ode(q_K_i, t) = v_K_i_LCC;
    ode(q_mem, t) = I_mem_LCC;
  enddef;

  def comp LCC_parameters as
    var kappa_LCC_Ca1: fmol_per_sec {init: 74.6745, pub: out};
    var kappa_LCC_Ca2: fmol_per_sec {init: 98.3196, pub: out};
    var kappa_LCC_K1: fmol_per_sec {init: 0.131085, pub: out};
    var kappa_LCC_K2: fmol_per_sec {init: 0.172592, pub: out};
    var kappa_d000: fmol_per_sec {init: 53.6616, pub: out};
    var kappa_d010: fmol_per_sec {init: 2.7099, pub: out};
    var kappa_d020: fmol_per_sec {init: 3.56797, pub: out};
    var kappa_d001: fmol_per_sec {init: 0.28538, pub: out};
    var kappa_d011: fmol_per_sec {init: 0.0144117, pub: out};
    var kappa_d021: fmol_per_sec {init: 0.018975, pub: out};
    var kappa_f1_000: fmol_per_sec {init: 5.16892, pub: out};
    var kappa_f1_100: fmol_per_sec {init: 25.6676, pub: out};
    var kappa_f1_001: fmol_per_sec {init: 0.0274891, pub: out};
    var kappa_f1_101: fmol_per_sec {init: 0.136504, pub: out};
    var kappa_f2_000: fmol_per_sec {init: 0.335961, pub: out};
    var kappa_f2_100: fmol_per_sec {init: 1.6683, pub: out};
    var kappa_f2_001: fmol_per_sec {init: 0.00178669, pub: out};
    var kappa_f2_101: fmol_per_sec {init: 0.00887227, pub: out};
    var kappa_f3_010: fmol_per_sec {init: 733.001, pub: out};
    var kappa_f3_110: fmol_per_sec {init: 3639.9, pub: out};
    var kappa_f3_011: fmol_per_sec {init: 3.89821, pub: out};
    var kappa_f3_111: fmol_per_sec {init: 19.3575, pub: out};
    var kappa_fCa000: fmol_per_sec {init: 97713.8, pub: out};
    var kappa_fCa100: fmol_per_sec {init: 485222, pub: out};
    var kappa_fCa010: fmol_per_sec {init: 4934.53, pub: out};
    var kappa_fCa110: fmol_per_sec {init: 24503.7, pub: out};
    var kappa_fCa020: fmol_per_sec {init: 6497.01, pub: out};
    var kappa_fCa120: fmol_per_sec {init: 32262.5, pub: out};
    var K_Ca_i: per_fmol {init: 0.090536, pub: out};
    var K_Ca_o: per_fmol {init: 0.663931, pub: out};
    var K_K_i: per_fmol {init: 0.0405426, pub: out};
    var K_K_o: per_fmol {init: 0.297313, pub: out};
    var K_000_LCC: per_fmol {init: 9.07096, pub: out};
    var K_010_LCC: per_fmol {init: 179.624, pub: out};
    var K_020_LCC: per_fmol {init: 136.425, pub: out};
    var K_100_LCC: per_fmol {init: 1.8267, pub: out};
    var K_110_LCC: per_fmol {init: 36.1725, pub: out};
    var K_120_LCC: per_fmol {init: 27.4733, pub: out};
    var K_001_LCC: per_fmol {init: 1705.66, pub: out};
    var K_011_LCC: per_fmol {init: 33775.6, pub: out};
    var K_021_LCC: per_fmol {init: 25652.8, pub: out};
    var K_101_LCC: per_fmol {init: 343.485, pub: out};
    var K_111_LCC: per_fmol {init: 6801.71, pub: out};
    var K_121_LCC: per_fmol {init: 5165.95, pub: out};
    var zCa: dimensionless {init: 2, pub: out};
    var zK: dimensionless {init: 1, pub: out};
    var z_fd: dimensionless {init: 2.1404, pub: out};
    var z_ff1: dimensionless {init: -1.1495, pub: out};
    var z_ff2: dimensionless {init: 0.72162, pub: out};
    var z_ff3: dimensionless {init: 4.2933, pub: out};
    var z_rCa: dimensionless {init: 2, pub: out};
    var z_rd: dimensionless {init: -2.1404, pub: out};
    var z_rf1: dimensionless {init: 1.8993, pub: out};
    var z_rf2: dimensionless {init: -0.52288, pub: out};
    var z_rf3: dimensionless {init: 0, pub: out};
  enddef;

  def comp LCC as
    var t: second {pub: in};
    var R: J_per_K_per_mol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mol {pub: in};
    var C_m: fF {pub: in};
    var q_Ca_o: fmol {pub: in};
    var q_Ca_i: fmol {pub: in};
    var q_K_o: fmol {pub: in};
    var q_K_i: fmol {pub: in};
    var q_S000_LCC: fmol {pub: in};
    var q_S010_LCC: fmol {pub: in};
    var q_S020_LCC: fmol {pub: in};
    var q_S100_LCC: fmol {pub: in};
    var q_S110_LCC: fmol {pub: in};
    var q_S120_LCC: fmol {pub: in};
    var q_S001_LCC: fmol {pub: in};
    var q_S011_LCC: fmol {pub: in};
    var q_S021_LCC: fmol {pub: in};
    var q_S101_LCC: fmol {pub: in};
    var q_S111_LCC: fmol {pub: in};
    var q_S121_LCC: fmol {pub: in};
    var K_000_LCC: per_fmol {pub: in};
    var K_001_LCC: per_fmol {pub: in};
    var K_010_LCC: per_fmol {pub: in};
    var K_011_LCC: per_fmol {pub: in};
    var K_020_LCC: per_fmol {pub: in};
    var K_021_LCC: per_fmol {pub: in};
    var K_100_LCC: per_fmol {pub: in};
    var K_101_LCC: per_fmol {pub: in};
    var K_110_LCC: per_fmol {pub: in};
    var K_111_LCC: per_fmol {pub: in};
    var K_120_LCC: per_fmol {pub: in};
    var K_121_LCC: per_fmol {pub: in};
    var K_Ca_o: per_fmol {pub: in};
    var K_Ca_i: per_fmol {pub: in};
    var K_K_o: per_fmol {pub: in};
    var K_K_i: per_fmol {pub: in};
    var kappa_LCC_Ca1: fmol_per_sec {pub: in};
    var kappa_LCC_Ca2: fmol_per_sec {pub: in};
    var kappa_LCC_K1: fmol_per_sec {pub: in};
    var kappa_LCC_K2: fmol_per_sec {pub: in};
    var kappa_d000: fmol_per_sec {pub: in};
    var kappa_d001: fmol_per_sec {pub: in};
    var kappa_d010: fmol_per_sec {pub: in};
    var kappa_d011: fmol_per_sec {pub: in};
    var kappa_d020: fmol_per_sec {pub: in};
    var kappa_d021: fmol_per_sec {pub: in};
    var kappa_f1_000: fmol_per_sec {pub: in};
    var kappa_f1_001: fmol_per_sec {pub: in};
    var kappa_f1_100: fmol_per_sec {pub: in};
    var kappa_f1_101: fmol_per_sec {pub: in};
    var kappa_f2_000: fmol_per_sec {pub: in};
    var kappa_f2_001: fmol_per_sec {pub: in};
    var kappa_f2_100: fmol_per_sec {pub: in};
    var kappa_f2_101: fmol_per_sec {pub: in};
    var kappa_f3_010: fmol_per_sec {pub: in};
    var kappa_f3_011: fmol_per_sec {pub: in};
    var kappa_f3_110: fmol_per_sec {pub: in};
    var kappa_f3_111: fmol_per_sec {pub: in};
    var kappa_fCa000: fmol_per_sec {pub: in};
    var kappa_fCa010: fmol_per_sec {pub: in};
    var kappa_fCa020: fmol_per_sec {pub: in};
    var kappa_fCa100: fmol_per_sec {pub: in};
    var kappa_fCa110: fmol_per_sec {pub: in};
    var kappa_fCa120: fmol_per_sec {pub: in};
    var zCa: dimensionless {pub: in};
    var zK: dimensionless {pub: in};
    var z_fd: dimensionless {pub: in};
    var z_ff1: dimensionless {pub: in};
    var z_ff2: dimensionless {pub: in};
    var z_ff3: dimensionless {pub: in};
    var z_rCa: dimensionless {pub: in};
    var z_rd: dimensionless {pub: in};
    var z_rf1: dimensionless {pub: in};
    var z_rf2: dimensionless {pub: in};
    var z_rf3: dimensionless {pub: in};
    var mu_Ca_o: J_per_mol;
    var v_Ca_o_LCC: fmol_per_sec {pub: out};
    var mu_Ca_i: J_per_mol;
    var v_Ca_i_LCC: fmol_per_sec {pub: out};
    var mu_K_o: J_per_mol;
    var mu_K_i: J_per_mol;
    var v_K_o_LCC: fmol_per_sec {pub: out};
    var v_K_i_LCC: fmol_per_sec {pub: out};
    var q_mem: fC {pub: in};
    var V_mem: volt;
    var I_mem_LCC: fA {pub: out};
    var Af_LCC_Ca1: J_per_mol;
    var Ar_LCC_Ca1: J_per_mol;
    var Am_LCC_Ca1: J_per_mol;
    var v_LCC_Ca1: fmol_per_sec;
    var Af_LCC_Ca2: J_per_mol;
    var Ar_LCC_Ca2: J_per_mol;
    var Am_LCC_Ca2: J_per_mol;
    var v_LCC_Ca2: fmol_per_sec;
    var Af_LCC_K1: J_per_mol;
    var Ar_LCC_K1: J_per_mol;
    var Am_LCC_K1: J_per_mol;
    var v_LCC_K1: fmol_per_sec;
    var Af_LCC_K2: J_per_mol;
    var Ar_LCC_K2: J_per_mol;
    var Am_LCC_K2: J_per_mol;
    var v_LCC_K2: fmol_per_sec;
    var Af_fCa00: J_per_mol;
    var Ar_fCa00: J_per_mol;
    var v_fCa00: fmol_per_sec;
    var Af_fCa01: J_per_mol;
    var Ar_fCa01: J_per_mol;
    var v_fCa01: fmol_per_sec;
    var Af_fCa02: J_per_mol;
    var Ar_fCa02: J_per_mol;
    var v_fCa02: fmol_per_sec;
    var Af_fCa10: J_per_mol;
    var Ar_fCa10: J_per_mol;
    var v_fCa10: fmol_per_sec;
    var Af_fCa11: J_per_mol;
    var Ar_fCa11: J_per_mol;
    var v_fCa11: fmol_per_sec;
    var Af_fCa12: J_per_mol;
    var Ar_fCa12: J_per_mol;
    var v_fCa12: fmol_per_sec;
    var mu_S000_LCC: J_per_mol;
    var v_S000_LCC: fmol_per_sec;
    var mu_S010_LCC: J_per_mol;
    var v_S010_LCC: fmol_per_sec;
    var mu_S020_LCC: J_per_mol;
    var v_S020_LCC: fmol_per_sec;
    var mu_S100_LCC: J_per_mol;
    var v_S100_LCC: fmol_per_sec;
    var mu_S110_LCC: J_per_mol;
    var v_S110_LCC: fmol_per_sec;
    var mu_S120_LCC: J_per_mol;
    var v_S120_LCC: fmol_per_sec;
    var mu_S001_LCC: J_per_mol;
    var v_S001_LCC: fmol_per_sec;
    var mu_S011_LCC: J_per_mol;
    var v_S011_LCC: fmol_per_sec;
    var mu_S021_LCC: J_per_mol;
    var v_S021_LCC: fmol_per_sec;
    var mu_S101_LCC: J_per_mol;
    var v_S101_LCC: fmol_per_sec;
    var mu_S111_LCC: J_per_mol;
    var v_S111_LCC: fmol_per_sec;
    var mu_S121_LCC: J_per_mol;
    var v_S121_LCC: fmol_per_sec;
    var Af_d000: J_per_mol;
    var Ar_d000: J_per_mol;
    var v_d000: fmol_per_sec;
    var Af_d010: J_per_mol;
    var Ar_d010: J_per_mol;
    var v_d010: fmol_per_sec;
    var Af_d020: J_per_mol;
    var Ar_d020: J_per_mol;
    var v_d020: fmol_per_sec;
    var Af_f1_000: J_per_mol;
    var Ar_f1_000: J_per_mol;
    var v_f1_000: fmol_per_sec;
    var Af_f2_000: J_per_mol;
    var Ar_f2_000: J_per_mol;
    var v_f2_000: fmol_per_sec;
    var Af_f3_010: J_per_mol;
    var Ar_f3_010: J_per_mol;
    var v_f3_010: fmol_per_sec;
    var Af_f1_100: J_per_mol;
    var Ar_f1_100: J_per_mol;
    var v_f1_100: fmol_per_sec;
    var Af_f2_100: J_per_mol;
    var Ar_f2_100: J_per_mol;
    var v_f2_100: fmol_per_sec;
    var Af_f3_110: J_per_mol;
    var Ar_f3_110: J_per_mol;
    var v_f3_110: fmol_per_sec;
    var Af_d001: J_per_mol;
    var Ar_d001: J_per_mol;
    var v_d001: fmol_per_sec;
    var Af_d011: J_per_mol;
    var Ar_d011: J_per_mol;
    var v_d011: fmol_per_sec;
    var Af_d021: J_per_mol;
    var Ar_d021: J_per_mol;
    var v_d021: fmol_per_sec;
    var Af_f1_001: J_per_mol;
    var Ar_f1_001: J_per_mol;
    var v_f1_001: fmol_per_sec;
    var Af_f2_001: J_per_mol;
    var Ar_f2_001: J_per_mol;
    var v_f2_001: fmol_per_sec;
    var Af_f3_011: J_per_mol;
    var Ar_f3_011: J_per_mol;
    var v_f3_011: fmol_per_sec;
    var Af_f1_101: J_per_mol;
    var Ar_f1_101: J_per_mol;
    var v_f1_101: fmol_per_sec;
    var Af_f2_101: J_per_mol;
    var Ar_f2_101: J_per_mol;
    var v_f2_101: fmol_per_sec;
    var Af_f3_111: J_per_mol;
    var Ar_f3_111: J_per_mol;
    var v_f3_111: fmol_per_sec;
    V_mem = q_mem/C_m;
    mu_Ca_o = R*T*ln(K_Ca_o*q_Ca_o);
    mu_Ca_i = R*T*ln(K_Ca_i*q_Ca_i);
    mu_K_o = R*T*ln(K_K_o*q_K_o);
    mu_K_i = R*T*ln(K_K_i*q_K_i);
    mu_S000_LCC = R*T*ln(K_000_LCC*q_S000_LCC);
    mu_S001_LCC = R*T*ln(K_001_LCC*q_S001_LCC);
    mu_S010_LCC = R*T*ln(K_010_LCC*q_S010_LCC);
    mu_S011_LCC = R*T*ln(K_011_LCC*q_S011_LCC);
    mu_S020_LCC = R*T*ln(K_020_LCC*q_S020_LCC);
    mu_S021_LCC = R*T*ln(K_021_LCC*q_S021_LCC);
    mu_S100_LCC = R*T*ln(K_100_LCC*q_S100_LCC);
    mu_S101_LCC = R*T*ln(K_101_LCC*q_S101_LCC);
    mu_S110_LCC = R*T*ln(K_110_LCC*q_S110_LCC);
    mu_S111_LCC = R*T*ln(K_111_LCC*q_S111_LCC);
    mu_S120_LCC = R*T*ln(K_120_LCC*q_S120_LCC);
    mu_S121_LCC = R*T*ln(K_121_LCC*q_S121_LCC);
    v_d000 = kappa_d000*(exp(Af_d000/(R*T))-exp(Ar_d000/(R*T)));
    v_d001 = kappa_d001*(exp(Af_d001/(R*T))-exp(Ar_d001/(R*T)));
    v_d010 = kappa_d010*(exp(Af_d010/(R*T))-exp(Ar_d010/(R*T)));
    v_d011 = kappa_d011*(exp(Af_d011/(R*T))-exp(Ar_d011/(R*T)));
    v_d020 = kappa_d020*(exp(Af_d020/(R*T))-exp(Ar_d020/(R*T)));
    v_d021 = kappa_d021*(exp(Af_d021/(R*T))-exp(Ar_d021/(R*T)));
    v_f1_000 = kappa_f1_000*(exp(Af_f1_000/(R*T))-exp(Ar_f1_000/(R*T)));
    v_f1_001 = kappa_f1_001*(exp(Af_f1_001/(R*T))-exp(Ar_f1_001/(R*T)));
    v_f1_100 = kappa_f1_100*(exp(Af_f1_100/(R*T))-exp(Ar_f1_100/(R*T)));
    v_f1_101 = kappa_f1_101*(exp(Af_f1_101/(R*T))-exp(Ar_f1_101/(R*T)));
    v_f2_000 = kappa_f2_000*(exp(Af_f2_000/(R*T))-exp(Ar_f2_000/(R*T)));
    v_f2_001 = kappa_f2_001*(exp(Af_f2_001/(R*T))-exp(Ar_f2_001/(R*T)));
    v_f2_100 = kappa_f2_100*(exp(Af_f2_100/(R*T))-exp(Ar_f2_100/(R*T)));
    v_f2_101 = kappa_f2_101*(exp(Af_f2_101/(R*T))-exp(Ar_f2_101/(R*T)));
    v_f3_010 = kappa_f3_010*(exp(Af_f3_010/(R*T))-exp(Ar_f3_010/(R*T)));
    v_f3_011 = kappa_f3_011*(exp(Af_f3_011/(R*T))-exp(Ar_f3_011/(R*T)));
    v_f3_110 = kappa_f3_110*(exp(Af_f3_110/(R*T))-exp(Ar_f3_110/(R*T)));
    v_f3_111 = kappa_f3_111*(exp(Af_f3_111/(R*T))-exp(Ar_f3_111/(R*T)));
    v_fCa00 = kappa_fCa000*(exp(Af_fCa00/(R*T))-exp(Ar_fCa00/(R*T)));
    v_fCa01 = kappa_fCa010*(exp(Af_fCa01/(R*T))-exp(Ar_fCa01/(R*T)));
    v_fCa02 = kappa_fCa020*(exp(Af_fCa02/(R*T))-exp(Ar_fCa02/(R*T)));
    v_fCa10 = kappa_fCa100*(exp(Af_fCa10/(R*T))-exp(Ar_fCa10/(R*T)));
    v_fCa11 = kappa_fCa110*(exp(Af_fCa11/(R*T))-exp(Ar_fCa11/(R*T)));
    v_fCa12 = kappa_fCa120*(exp(Af_fCa12/(R*T))-exp(Ar_fCa12/(R*T)));
    Af_LCC_Ca1 = mu_Ca_i+zCa*F*V_mem+mu_S111_LCC;
    Af_LCC_Ca2 = mu_Ca_i+zCa*F*V_mem+mu_S121_LCC;
    Af_LCC_K1 = mu_K_i+zK*F*V_mem+mu_S111_LCC;
    Af_LCC_K2 = mu_K_i+zK*F*V_mem+mu_S121_LCC;
    Af_d000 = R*T*ln(K_000_LCC*q_S000_LCC)+z_fd*F*V_mem;
    Af_d001 = R*T*ln(K_001_LCC*q_S001_LCC)+z_fd*F*V_mem;
    Af_d010 = R*T*ln(K_010_LCC*q_S010_LCC)+z_fd*F*V_mem;
    Af_d011 = R*T*ln(K_011_LCC*q_S011_LCC)+z_fd*F*V_mem;
    Af_d020 = R*T*ln(K_020_LCC*q_S020_LCC)+z_fd*F*V_mem;
    Af_d021 = R*T*ln(K_021_LCC*q_S021_LCC)+z_fd*F*V_mem;
    Af_f1_000 = R*T*ln(K_000_LCC*q_S000_LCC)+z_ff1*F*V_mem;
    Af_f1_001 = R*T*ln(K_001_LCC*q_S001_LCC)+z_ff1*F*V_mem;
    Af_f1_100 = R*T*ln(K_100_LCC*q_S100_LCC)+z_ff1*F*V_mem;
    Af_f1_101 = R*T*ln(K_101_LCC*q_S101_LCC)+z_ff1*F*V_mem;
    Af_f2_000 = R*T*ln(K_000_LCC*q_S000_LCC)+z_ff2*F*V_mem;
    Af_f2_001 = R*T*ln(K_001_LCC*q_S001_LCC)+z_ff2*F*V_mem;
    Af_f2_100 = R*T*ln(K_100_LCC*q_S100_LCC)+z_ff2*F*V_mem;
    Af_f2_101 = R*T*ln(K_101_LCC*q_S101_LCC)+z_ff2*F*V_mem;
    Af_f3_010 = R*T*ln(K_010_LCC*q_S010_LCC)+z_ff3*F*V_mem;
    Af_f3_011 = R*T*ln(K_011_LCC*q_S011_LCC)+z_ff3*F*V_mem;
    Af_f3_110 = R*T*ln(K_110_LCC*q_S110_LCC)+z_ff3*F*V_mem;
    Af_f3_111 = R*T*ln(K_111_LCC*q_S111_LCC)+z_ff3*F*V_mem;
    Af_fCa00 = mu_S000_LCC;
    Af_fCa01 = mu_S010_LCC;
    Af_fCa02 = mu_S020_LCC;
    Af_fCa10 = mu_S100_LCC;
    Af_fCa11 = mu_S110_LCC;
    Af_fCa12 = mu_S120_LCC;
    Am_LCC_Ca1 = zCa*F*V_mem;
    Am_LCC_Ca2 = zCa*F*V_mem;
    Am_LCC_K1 = zK*F*V_mem;
    Am_LCC_K2 = zK*F*V_mem;
    Ar_LCC_Ca1 = mu_Ca_o+mu_S111_LCC;
    Ar_LCC_Ca2 = mu_Ca_o+mu_S121_LCC;
    Ar_LCC_K1 = mu_K_o+mu_S111_LCC;
    Ar_LCC_K2 = mu_K_o+mu_S121_LCC;
    Ar_d000 = R*T*ln(K_100_LCC*q_S100_LCC)+z_rd*F*V_mem;
    Ar_d001 = R*T*ln(K_101_LCC*q_S101_LCC)+z_rd*F*V_mem;
    Ar_d010 = R*T*ln(K_110_LCC*q_S110_LCC)+z_rd*F*V_mem;
    Ar_d011 = R*T*ln(K_111_LCC*q_S111_LCC)+z_rd*F*V_mem;
    Ar_d020 = R*T*ln(K_120_LCC*q_S120_LCC)+z_rd*F*V_mem;
    Ar_d021 = R*T*ln(K_121_LCC*q_S121_LCC)+z_rd*F*V_mem;
    Ar_f1_000 = R*T*ln(K_010_LCC*q_S010_LCC)+z_rf1*F*V_mem;
    Ar_f1_001 = R*T*ln(K_011_LCC*q_S011_LCC)+z_rf1*F*V_mem;
    Ar_f1_100 = R*T*ln(K_110_LCC*q_S110_LCC)+z_rf1*F*V_mem;
    Ar_f1_101 = R*T*ln(K_111_LCC*q_S111_LCC)+z_rf1*F*V_mem;
    Ar_f2_000 = R*T*ln(K_020_LCC*q_S020_LCC)+z_rf2*F*V_mem;
    Ar_f2_001 = R*T*ln(K_021_LCC*q_S021_LCC)+z_rf2*F*V_mem;
    Ar_f2_100 = R*T*ln(K_120_LCC*q_S120_LCC)+z_rf2*F*V_mem;
    Ar_f2_101 = R*T*ln(K_121_LCC*q_S121_LCC)+z_rf2*F*V_mem;
    Ar_f3_010 = R*T*ln(K_020_LCC*q_S020_LCC)+z_rf3*F*V_mem;
    Ar_f3_011 = R*T*ln(K_021_LCC*q_S021_LCC)+z_rf3*F*V_mem;
    Ar_f3_110 = R*T*ln(K_120_LCC*q_S120_LCC)+z_rf3*F*V_mem;
    Ar_f3_111 = R*T*ln(K_121_LCC*q_S121_LCC)+z_rf3*F*V_mem;
    Ar_fCa00 = R*T*ln(K_001_LCC*q_S001_LCC)+z_rCa*mu_Ca_i;
    Ar_fCa01 = R*T*ln(K_011_LCC*q_S011_LCC)+z_rCa*mu_Ca_i;
    Ar_fCa02 = R*T*ln(K_021_LCC*q_S021_LCC)+z_rCa*mu_Ca_i;
    Ar_fCa10 = R*T*ln(K_101_LCC*q_S101_LCC)+z_rCa*mu_Ca_i;
    Ar_fCa11 = R*T*ln(K_111_LCC*q_S111_LCC)+z_rCa*mu_Ca_i;
    Ar_fCa12 = R*T*ln(K_121_LCC*q_S121_LCC)+z_rCa*mu_Ca_i;
    I_mem_LCC = F*(z_rf2*v_f2_001-z_ff2*v_f2_001+z_rf3*v_f3_011-z_ff3*v_f3_011+z_rf1*v_f1_101-z_ff1*v_f1_101+z_rf2*v_f2_101-z_ff2*v_f2_101+z_rf3*v_f3_111-z_ff3*v_f3_111+z_rf1*v_f1_001-z_ff1*v_f1_001+z_rd*v_d021-z_fd*v_d021+z_rd*v_d011-z_fd*v_d011+z_rd*v_d001-z_fd*v_d001+z_rf3*v_f3_110-z_ff3*v_f3_110+z_rf2*v_f2_100-z_ff2*v_f2_100+z_rf1*v_f1_100-z_ff1*v_f1_100+z_rf3*v_f3_010-z_ff3*v_f3_010+z_rf2*v_f2_000-z_ff2*v_f2_000+z_rf1*v_f1_000-z_ff1*v_f1_000+z_rd*v_d020-z_fd*v_d020+z_rd*v_d010-z_fd*v_d010+z_rd*v_d000-z_fd*v_d000-(zCa*v_LCC_Ca1+zCa*v_LCC_Ca2)-(zK*v_LCC_K1+zK*v_LCC_K2));
    v_Ca_o_LCC = v_LCC_Ca2+v_LCC_Ca1;
    v_Ca_i_LCC = +z_rCa*v_fCa10+z_rCa*v_fCa11+z_rCa*v_fCa02+z_rCa*v_fCa01+z_rCa*v_fCa00+z_rCa*v_fCa12-v_LCC_Ca1-v_LCC_Ca2;
    v_K_o_LCC = v_LCC_K2+v_LCC_K1;
    v_K_i_LCC = -v_LCC_K1-v_LCC_K2;
    v_S000_LCC = -v_d000-v_f1_000-v_f2_000-v_fCa00;
    v_S001_LCC = -v_d001-v_f1_001-v_f2_001-(-v_fCa00);
    v_S010_LCC = -v_d010+v_f1_000-v_fCa01-v_f3_010;
    v_S011_LCC = -v_d011+v_f1_001-(-v_fCa01)-v_f3_011;
    v_S020_LCC = -v_d020+v_f2_000-v_fCa02+v_f3_010;
    v_S021_LCC = -v_d021+v_f2_001-(-v_fCa02)+v_f3_011;
    v_S100_LCC = -v_f2_100+v_d000-v_f1_100-v_fCa10;
    v_S101_LCC = -v_f2_101+v_d001-v_f1_101-(-v_fCa10);
    v_S110_LCC = v_f1_100+v_d010-v_fCa11-v_f3_110;
    v_S111_LCC = v_f1_101+v_d011-(-v_fCa11+v_LCC_Ca1-v_LCC_Ca1+v_LCC_K1-v_LCC_K1)-v_f3_111;
    v_S120_LCC = v_f2_100+v_d020-v_fCa12+v_f3_110;
    v_S121_LCC = v_f2_101+v_d021-(-v_fCa12+v_LCC_Ca2-v_LCC_Ca2+v_LCC_K2-v_LCC_K2)+v_f3_111;
    ode(q_S000_LCC, t) = v_S000_LCC;
    ode(q_S010_LCC, t) = v_S010_LCC;
    ode(q_S020_LCC, t) = v_S020_LCC;
    ode(q_S100_LCC, t) = v_S100_LCC;
    ode(q_S110_LCC, t) = v_S110_LCC;
    ode(q_S120_LCC, t) = v_S120_LCC;
    ode(q_S001_LCC, t) = v_S001_LCC;
    ode(q_S011_LCC, t) = v_S011_LCC;
    ode(q_S021_LCC, t) = v_S021_LCC;
    ode(q_S101_LCC, t) = v_S101_LCC;
    ode(q_S111_LCC, t) = v_S111_LCC;
    ode(q_S121_LCC, t) = v_S121_LCC;
    v_LCC_Ca1 = sel
      case Am_LCC_Ca1 == 0{J_per_mol}:
        kappa_LCC_Ca1*(exp(Af_LCC_Ca1/(R*T))-exp(Ar_LCC_Ca1/(R*T)));
      otherwise:
        kappa_LCC_Ca1*Am_LCC_Ca1/(R*T)/(exp(Am_LCC_Ca1/(R*T))-1{dimensionless})*(exp(Af_LCC_Ca1/(R*T))-exp(Ar_LCC_Ca1/(R*T)));
    endsel;
    v_LCC_Ca2 = sel
      case Am_LCC_Ca2 == 0{J_per_mol}:
        kappa_LCC_Ca2*(exp(Af_LCC_Ca2/(R*T))-exp(Ar_LCC_Ca2/(R*T)));
      otherwise:
        kappa_LCC_Ca2*Am_LCC_Ca2/(R*T)/(exp(Am_LCC_Ca2/(R*T))-1{dimensionless})*(exp(Af_LCC_Ca2/(R*T))-exp(Ar_LCC_Ca2/(R*T)));
    endsel;
    v_LCC_K1 = sel
      case Am_LCC_K1 == 0{J_per_mol}:
        kappa_LCC_K1*(exp(Af_LCC_K1/(R*T))-exp(Ar_LCC_K1/(R*T)));
      otherwise:
        kappa_LCC_K1*Am_LCC_K1/(R*T)/(exp(Am_LCC_K1/(R*T))-1{dimensionless})*(exp(Af_LCC_K1/(R*T))-exp(Ar_LCC_K1/(R*T)));
    endsel;
    v_LCC_K2 = sel
      case Am_LCC_K2 == 0{J_per_mol}:
        kappa_LCC_K2*(exp(Af_LCC_K2/(R*T))-exp(Ar_LCC_K2/(R*T)));
      otherwise:
        kappa_LCC_K2*Am_LCC_K2/(R*T)/(exp(Am_LCC_K2/(R*T))-1{dimensionless})*(exp(Af_LCC_K2/(R*T))-exp(Ar_LCC_K2/(R*T)));
    endsel;
    // check conservation
    var Ca_tot: fmol;
    Ca_tot = q_Ca_o+q_Ca_i+q_S001_LCC+q_S011_LCC+q_S021_LCC+q_S101_LCC+q_S111_LCC+q_S121_LCC;
  enddef;
  def map between environment and LCC for
    vars t and t;
    vars q_Ca_i and q_Ca_i;
    vars q_Ca_o and q_Ca_o;
    vars q_K_i and q_K_i;
    vars q_K_o and q_K_o;
    vars q_S000_LCC and q_S000_LCC;
    vars q_S010_LCC and q_S010_LCC;
    vars q_S020_LCC and q_S020_LCC;
    vars q_S100_LCC and q_S100_LCC;
    vars q_S110_LCC and q_S110_LCC;
    vars q_S120_LCC and q_S120_LCC;
    vars q_S001_LCC and q_S001_LCC;
    vars q_S011_LCC and q_S011_LCC;
    vars q_S021_LCC and q_S021_LCC;
    vars q_S101_LCC and q_S101_LCC;
    vars q_S111_LCC and q_S111_LCC;
    vars q_S121_LCC and q_S121_LCC;
    vars q_mem and q_mem;
    vars C_m and C_m;
    vars v_Ca_o_LCC and v_Ca_o_LCC;
    vars v_Ca_i_LCC and v_Ca_i_LCC;
    vars v_K_o_LCC and v_K_o_LCC;
    vars v_K_i_LCC and v_K_i_LCC;
    vars I_mem_LCC and I_mem_LCC;
  enddef;
  def map between LCC_parameters and LCC for
    vars K_Ca_i and K_Ca_i;
    vars K_Ca_o and K_Ca_o;
    vars K_K_i and K_K_i;
    vars K_K_o and K_K_o;
    vars kappa_LCC_Ca1 and kappa_LCC_Ca1;
    vars kappa_LCC_Ca2 and kappa_LCC_Ca2;
    vars kappa_LCC_K1 and kappa_LCC_K1;
    vars kappa_LCC_K2 and kappa_LCC_K2;
    vars kappa_d000 and kappa_d000;
    vars kappa_d010 and kappa_d010;
    vars kappa_d020 and kappa_d020;
    vars kappa_d001 and kappa_d001;
    vars kappa_d011 and kappa_d011;
    vars kappa_d021 and kappa_d021;
    vars kappa_f1_000 and kappa_f1_000;
    vars kappa_f1_100 and kappa_f1_100;
    vars kappa_f1_001 and kappa_f1_001;
    vars kappa_f1_101 and kappa_f1_101;
    vars kappa_f2_000 and kappa_f2_000;
    vars kappa_f2_100 and kappa_f2_100;
    vars kappa_f2_001 and kappa_f2_001;
    vars kappa_f2_101 and kappa_f2_101;
    vars kappa_f3_010 and kappa_f3_010;
    vars kappa_f3_110 and kappa_f3_110;
    vars kappa_f3_011 and kappa_f3_011;
    vars kappa_f3_111 and kappa_f3_111;
    vars kappa_fCa000 and kappa_fCa000;
    vars kappa_fCa100 and kappa_fCa100;
    vars kappa_fCa010 and kappa_fCa010;
    vars kappa_fCa110 and kappa_fCa110;
    vars kappa_fCa020 and kappa_fCa020;
    vars kappa_fCa120 and kappa_fCa120;
    vars K_000_LCC and K_000_LCC;
    vars K_010_LCC and K_010_LCC;
    vars K_020_LCC and K_020_LCC;
    vars K_100_LCC and K_100_LCC;
    vars K_110_LCC and K_110_LCC;
    vars K_120_LCC and K_120_LCC;
    vars K_001_LCC and K_001_LCC;
    vars K_011_LCC and K_011_LCC;
    vars K_021_LCC and K_021_LCC;
    vars K_101_LCC and K_101_LCC;
    vars K_111_LCC and K_111_LCC;
    vars K_121_LCC and K_121_LCC;
    vars z_rCa and z_rCa;
    vars z_fd and z_fd;
    vars z_ff1 and z_ff1;
    vars z_ff2 and z_ff2;
    vars z_ff3 and z_ff3;
    vars z_rd and z_rd;
    vars z_rf1 and z_rf1;
    vars z_rf2 and z_rf2;
    vars z_rf3 and z_rf3;
    vars zCa and zCa;
    vars zK and zK;
  enddef;
  def map between constants and LCC for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
enddef;
// #model
// reference: subject_type keyword; protein-modules
