def model Calvo_Gallego_2022 as
  // ---------------------------------------------------------------
  //   Units
  // ---------------------------------------------------------------
  def unit day as
    unit second {mult: 86400.0};
  enddef;
  def unit pM as
    unit mole {pref: pico};
    unit litre {expo: -1};
  enddef;
  def unit flux as
    unit pM;
    unit day {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit day {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit pM {expo: -1};
    unit day {expo: -1};
  enddef;
  def unit MPa as
    unit pascal {pref: mega};
  enddef;
  def unit per_MPa as
    unit pascal {expo: -1, pref: mega};
  enddef;
  def unit g_per_cm3 as
    unit gram;
    unit metre {expo: -3, pref: centi};
  enddef;
  // ---------------------------------------------------------------
  //   Components
  // ---------------------------------------------------------------
  //  Environment

  def comp environment as
    var time: day {pub: out};
  enddef;
  // OBp

  def comp OBp as
    var OBp: pM {init: 1.0993792851e-03, pub: out};
    var OBp_t0: pM {init: 1.0993792851e-03, pub: out};
    var time: day {pub: in};
    var OBp_in: flux;
    var OBp_out: flux {pub: out};
    var OBu_t0: pM {pub: in};
    var DifferOBpNormal: first_order_rate_constant;
    var D_OBp_t0: first_order_rate_constant {pub: in};
    var TGFbNormal: pM {init: 0.0001};
    var KD_TGF_beta_repress: pM {pub: in};
    var ProlifOBpNormal: first_order_rate_constant;
    var frac_prolifOBp_vs_differOBu: dimensionless {init: 0.5};
    var OBpNormal: pM {init: 0.001};
    var OBp_sat: pM {init: 0.005};
    var DifferOBu: first_order_rate_constant;
    var ProlifOBp: first_order_rate_constant;
    var D_OBu_t0: first_order_rate_constant {pub: in};
    var pd_OBp_t0: flux {pub: in};
    var Pi_TGFbeta_OBu_act_t0: dimensionless {pub: in};
    var Pi_TGFbeta_OBp_rep: dimensionless {pub: in};
    var Pi_WNT: dimensionless {pub: in};
    var Pi_WNT_0: dimensionless {pub: in};
    DifferOBpNormal = D_OBp_t0*1{dimensionless}/(1{dimensionless}+TGFbNormal/KD_TGF_beta_repress);
    ProlifOBpNormal = frac_prolifOBp_vs_differOBu*DifferOBpNormal/(1{dimensionless}-OBpNormal/OBp_sat);
    DifferOBu = (1{dimensionless}-frac_prolifOBp_vs_differOBu)*D_OBu_t0*Pi_TGFbeta_OBu_act_t0;
    ProlifOBp = ProlifOBpNormal*(1{dimensionless}-OBp/OBp_sat);
    OBp_in = DifferOBu*OBu_t0+ProlifOBp*OBp*Pi_WNT/Pi_WNT_0+pd_OBp_t0;
    OBp_out = D_OBp_t0*Pi_TGFbeta_OBp_rep*OBp;
    ode(OBp, time) = OBp_in-OBp_out;
  enddef;
  // OBa

  def comp OBa as
    var OBa: pM {init: 8.7256220470e-04, pub: out};
    var time: day {pub: in};
    var OBa_in: flux;
    var OBa_out: flux;
    var OBp_out: flux {pub: in};
    var pd_OBa_t0: flux {pub: in};
    var D_OBa_t0: first_order_rate_constant {pub: in};
    var A_OBa_t0: first_order_rate_constant {pub: in};
    OBa_in = OBp_out+pd_OBa_t0;
    OBa_out = (D_OBa_t0+A_OBa_t0)*OBa;
    ode(OBa, time) = OBa_in-OBa_out;
  enddef;
  // OCp

  def comp OCp as
    var OCp: pM {init: 1.3327554974e-03, pub: out};
    var time: day {pub: in};
    var OCp_in: flux;
    var OCp_out: flux {pub: out};
    var OCu_t0: pM {pub: in};
    var Pi_RANKL_act_OCp: dimensionless {pub: in};
    var Pi_RANKL_act_OCu: dimensionless {pub: in};
    var D_OCu_t0: first_order_rate_constant {pub: in};
    var pd_OCp_t0: flux {pub: in};
    var D_OCp_t0: first_order_rate_constant {pub: in};
    OCp_in = D_OCu_t0*OCu_t0*Pi_RANKL_act_OCu+pd_OCp_t0;
    OCp_out = D_OCp_t0*Pi_RANKL_act_OCp*OCp;
    ode(OCp, time) = OCp_in-OCp_out;
  enddef;
  // OCa

  def comp OCa as
    var OCa: pM {init: 1.7451244094e-05, pub: out};
    var time: day {pub: in};
    var OCa_in: flux;
    var OCa_out: flux;
    var OCp_out: flux {pub: in};
    var pd_OCa_t0: flux {pub: in};
    var A_OCa_t0: first_order_rate_constant {pub: in};
    var Pi_TGFbeta_OCa_act: dimensionless {pub: in};
    OCa_in = OCp_out+pd_OCa_t0;
    OCa_out = A_OCa_t0*Pi_TGFbeta_OCa_act*OCa;
    ode(OCa, time) = OCa_in-OCa_out;
  enddef;
  // Bone marix fraction in [%]

  def comp fbm as
    var fbm: dimensionless {init: 25, pub: out};
    var time: day {pub: in};
    var OBa: pM {pub: in};
    var OCa: pM {pub: in};
    var K_form: second_order_rate_constant {pub: in};
    var K_res: second_order_rate_constant {pub: in};
    var dfbmdt: first_order_rate_constant {pub: out};
    dfbmdt = K_form*OBa-K_res*OCa;
    ode(fbm, time) = dfbmdt;
  enddef;
  // Osteocytes

  def comp OCY as
    var OCY: pM {init: 1.2093400628e-02, pub: out};
    var OCY_act: pM {pub: out};
    var OCY_act_0: pM {pub: out};
    var fbm: dimensionless {pub: in};
    var time: day {pub: in};
    var fact_0: pM {pub: in};
    var dfbmdt: first_order_rate_constant {pub: in};
    OCY_act = fact_0*fbm;
    OCY_act_0 = fact_0*20{dimensionless};
    ode(OCY, time) = fact_0*dfbmdt;
  enddef;
  // Mineralization

  def comp vm as
    var vm: dimensionless {init: 4.1302790850e-01, pub: out};
    var time: day {pub: in};
    var OBa: pM {pub: in};
    var fbm: dimensionless {pub: in};
    var XKAPPA: first_order_rate_constant {pub: in};
    var vmmax: dimensionless {pub: in};
    var K_form: second_order_rate_constant {pub: in};
    ode(vm, time) = XKAPPA*(vmmax-vm)-vm*K_form*OBa/fbm;
  enddef;
  // PTH

  def comp PTH as
    var PTH_tot: pM;
    var Pi_PTH_act: dimensionless;
    var Pi_PTH_rep: dimensionless {pub: out};
    var Beta_PTH: flux {pub: in};
    var P_PTH_d: flux {pub: in};
    var Deg_PTH: first_order_rate_constant {pub: in};
    var KD_PTH_act: pM {pub: in};
    var KD_PTH_rep: pM {pub: in};
    PTH_tot = (Beta_PTH+P_PTH_d)/Deg_PTH;
    Pi_PTH_act = PTH_tot/(PTH_tot+KD_PTH_act);
    Pi_PTH_rep = 1{dimensionless}/(1{dimensionless}+PTH_tot/KD_PTH_rep);
  enddef;
  // RANK-RANKL-OPG

  def comp RANK_RANKL_OPG as
    var RANK: pM;
    var RANKL: pM;
    var OPG: pM;
    var RANKL_tot: pM;
    var RANKL_max: pM;
    var P_RANKL1: flux;
    var P_RANKL2: flux;
    var P_RANKL: flux;
    var P_RANKL_d: flux {pub: in};
    var Pi_RANKL_act_OCp: dimensionless {pub: out};
    var Pi_RANKL_act_OCu: dimensionless {pub: out};
    var OBp: pM {pub: in};
    var OBp_t0: pM {pub: in};
    var OBa: pM {pub: in};
    var OCp: pM {pub: in};
    var OCY_act: pM {pub: in};
    var Pi_PTH_rep: dimensionless {pub: in};
    var Pi_NO_PTH_act_rep: dimensionless {pub: in};
    var N_RANK_OCp: dimensionless {pub: in};
    var N_RANKL_OBp_max: dimensionless {pub: in};
    var K_RANK_RANKL: pM {pub: in};
    var Beta_OPG: first_order_rate_constant {pub: in};
    var OPG_max: pM {pub: in};
    var Deg_OPG: first_order_rate_constant {pub: in};
    var Deg_OPG_RANKL: first_order_rate_constant {pub: in};
    var K_OPG_RANKL: pM {pub: in};
    var Beta_RANKL_OCY: first_order_rate_constant {pub: in};
    var Beta_RANKL_OBp: first_order_rate_constant {pub: in};
    var Deg_RANKL: first_order_rate_constant {pub: in};
    var Deg_RANK_RANKL: first_order_rate_constant {pub: in};
    var KD_RANKL_act_OCp: pM {pub: in};
    var KD_RANKL_act_OCu: pM {pub: in};
    RANK = N_RANK_OCp*OCp/(1{dimensionless}+1{dimensionless}/K_RANK_RANKL*RANKL);
    OPG = Beta_OPG*Pi_PTH_rep*OBa/(Beta_OPG*Pi_PTH_rep*OBa/OPG_max+Deg_OPG+Deg_OPG_RANKL/K_OPG_RANKL*RANKL);
    RANKL_tot = RANKL*(1{dimensionless}+RANK/K_RANK_RANKL+OPG/K_OPG_RANKL);
    RANKL_max = N_RANKL_OBp_max*OBp_t0;
    P_RANKL1 = Beta_RANKL_OCY*(1{dimensionless}-RANKL_tot/RANKL_max)*OCY_act;
    P_RANKL2 = Beta_RANKL_OBp*Pi_NO_PTH_act_rep*(1{dimensionless}-RANKL_tot/RANKL_max)*OBp;
    P_RANKL = P_RANKL1+P_RANKL2;
    RANKL = (P_RANKL+P_RANKL_d)/(Deg_RANKL+Deg_RANK_RANKL/K_RANK_RANKL*RANK+Deg_OPG_RANKL/K_OPG_RANKL*OPG);
    Pi_RANKL_act_OCp = RANKL/(KD_RANKL_act_OCp+RANKL);
    Pi_RANKL_act_OCu = RANKL/(KD_RANKL_act_OCu+RANKL);
  enddef;
  // TGF-beta

  def comp TGF_beta as
    var TGF_beta: pM;
    var TGF_beta_t0: pM;
    var OCa: pM {pub: in};
    var OCa_t0: pM {init: 0.0001};
    var Alpha: dimensionless {pub: in};
    var Pi_TGFbeta_OBu_act_t0: dimensionless {pub: out};
    var KD_TGF_beta_activate: pM {pub: in};
    var KD_TGF_beta_repress: pM {pub: in};
    var Pi_TGFbeta_OBu_act: dimensionless;
    var Pi_TGFbeta_OCa_act: dimensionless {pub: out};
    var Pi_TGFbeta_OBp_rep: dimensionless {pub: out};
    TGF_beta_t0 = Alpha*OCa_t0;
    Pi_TGFbeta_OBu_act_t0 = TGF_beta_t0/(KD_TGF_beta_activate+TGF_beta_t0);
    TGF_beta = Alpha*OCa;
    Pi_TGFbeta_OBu_act = TGF_beta/(KD_TGF_beta_activate+TGF_beta);
    Pi_TGFbeta_OCa_act = TGF_beta/(KD_TGF_beta_activate+TGF_beta);
    Pi_TGFbeta_OBp_rep = 1{dimensionless}/(1{dimensionless}+TGF_beta/KD_TGF_beta_repress);
  enddef;
  // Scl

  def comp Scl as
    var Scl: pM {pub: out};
    var Scl_0: pM {pub: out};
    var P_Scl_b: flux;
    var P_Scl_b_0: flux;
    var A: second_order_rate_constant;
    var A_0: second_order_rate_constant;
    var B: first_order_rate_constant;
    var B_0: first_order_rate_constant;
    var C: flux;
    var C_0: flux;
    var OCYprod: flux;
    var OCYprod_0: flux;
    var OBp: pM {pub: in};
    var OBp_t0: pM {pub: in};
    var Wnt: pM {pub: in};
    var Wnt_0: pM {pub: in};
    var OCY_act: pM {pub: in};
    var OCY_act_0: pM {pub: in};
    var Pi_eps_rep: dimensionless {pub: in};
    var Pi_eps_rep_stst: dimensionless {pub: in};
    var Beta_Scl: first_order_rate_constant;
    var Beta_Scl_0: first_order_rate_constant {pub: in};
    var KD_SclLRP5: pM {pub: in};
    var Deg_Scl: first_order_rate_constant {pub: in};
    var Scl_max: pM {pub: in};
    var KD_WntLRP5: pM {pub: in};
    var Deg_SclLRP5: first_order_rate_constant {pub: in};
    var LRP5perCell: dimensionless {pub: in};
    var LRP5tot: pM;
    var LRP5tot_0: pM;
    var P_Scl_d: flux {pub: in};
    // Scl
    Beta_Scl = Beta_Scl_0;
    OCYprod = Beta_Scl*OCY_act*Pi_eps_rep;
    P_Scl_b = OCYprod*(1{dimensionless}-Scl/Scl_max);
    LRP5tot = LRP5perCell*OBp;
    A = 1{dimensionless}/KD_SclLRP5*(Deg_Scl+OCYprod/Scl_max);
    B = A*KD_SclLRP5*(1{dimensionless}+Wnt/KD_WntLRP5)+Deg_SclLRP5*LRP5tot/KD_SclLRP5-(P_Scl_d+OCYprod)/KD_SclLRP5;
    C = -(P_Scl_d+OCYprod)*(1{dimensionless}+Wnt/KD_WntLRP5);
    Scl = (-B+sqrt(sqr(B)-4{dimensionless}*A*C))/(2{dimensionless}*A);
    OCYprod_0 = Beta_Scl_0*OCY_act_0*Pi_eps_rep_stst;
    P_Scl_b_0 = OCYprod_0*(1{dimensionless}-Scl_0/Scl_max);
    LRP5tot_0 = LRP5perCell*OBp_t0;
    A_0 = 1{dimensionless}/KD_SclLRP5*(Deg_Scl+OCYprod_0/Scl_max);
    B_0 = A_0*KD_SclLRP5*(1{dimensionless}+Wnt_0/KD_WntLRP5)+Deg_SclLRP5*LRP5tot_0/KD_SclLRP5-(P_Scl_d+OCYprod_0)/KD_SclLRP5;
    C_0 = -(P_Scl_d+OCYprod_0)*(1{dimensionless}+Wnt_0/KD_WntLRP5);
    Scl_0 = (-B_0+sqrt(sqr(B_0)-4{dimensionless}*A_0*C_0))/(2{dimensionless}*A_0);
  enddef;
  // Wnt

  def comp Wnt as
    var Wnt: pM {pub: out};
    var Wnt_0: pM {pub: in};
    var Scl: pM {pub: in};
    var Scl_0: pM {pub: in};
    var Pi_WNT: dimensionless {pub: out};
    var Pi_WNT_0: dimensionless {pub: out};
    var KD_WntLRP5: pM {pub: in};
    var KD_SclLRP5: pM {pub: in};
    Wnt = Wnt_0;
    Pi_WNT = Wnt/(KD_WntLRP5*(1{dimensionless}+Wnt/KD_WntLRP5+Scl/KD_SclLRP5));
    Pi_WNT_0 = Wnt_0/(KD_WntLRP5*(1{dimensionless}+Wnt_0/KD_WntLRP5+Scl_0/KD_SclLRP5));
  enddef;
  // NO and PTH

  def comp NO_PTH as
    var Pi_NO_PTH_act_rep: dimensionless {pub: out};
    var PTH_tot: pM;
    var Beta_PTH: flux {pub: in};
    var P_PTH_d: flux {pub: in};
    var Deg_PTH: first_order_rate_constant {pub: in};
    var NO_tot: pM;
    var NO_eq: pM;
    var Beta_NO: first_order_rate_constant;
    var Beta_NO_0: first_order_rate_constant {pub: in};
    var P_NO_d: flux {pub: in};
    var Deg_NO: first_order_rate_constant {pub: in};
    var Pi_eps_act: dimensionless {pub: in};
    var Pi_eps_act_stst: dimensionless {pub: in};
    var OCY_act: pM {pub: in};
    var OCY_act_0: pM {pub: in};
    var NO_max: pM {pub: in};
    var KD_rep_NO: pM;
    var aa: dimensionless {init: 2};
    var Pi_PTH_act: dimensionless;
    var KD_PTH_act: pM {pub: in};
    var Pi_NO_rep: dimensionless;
    var lambda_s: dimensionless {pub: in};
    var lambda_c: dimensionless {pub: in};
    PTH_tot = (Beta_PTH+P_PTH_d)/Deg_PTH;
    Beta_NO = Beta_NO_0;
    NO_tot = (Beta_NO*Pi_eps_act*OCY_act+P_NO_d)/(Deg_NO+Beta_NO*Pi_eps_act*OCY_act/NO_max);
    NO_eq = Beta_NO_0*Pi_eps_act_stst*OCY_act_0/(Deg_NO+Beta_NO_0*Pi_eps_act_stst*OCY_act_0/NO_max);
    KD_rep_NO = NO_eq/aa;
    Pi_PTH_act = PTH_tot/(PTH_tot+KD_PTH_act);
    Pi_NO_rep = 1{dimensionless}/(1{dimensionless}+NO_tot/KD_rep_NO);
    Pi_NO_PTH_act_rep = lambda_s*(Pi_PTH_act+Pi_NO_rep)+lambda_c*Pi_PTH_act*Pi_NO_rep;
  enddef;
  // Strain energy density

  def comp SED as
    var SED: MPa;
    var SED_bm: MPa;
    var Pi_eps_act: dimensionless {pub: out};
    var Pi_eps_rep: dimensionless {pub: out};
    var Pi_eps_act_stst: dimensionless {pub: out};
    var Pi_eps_rep_stst: dimensionless {pub: out};
    var sig_macro_t0: MPa {pub: in};
    var de_sig_macro: MPa {pub: in};
    var sig_macro: MPa;
    var sig_1: MPa;
    var sig_2: MPa;
    var sig_3: MPa;
    var sig_4: MPa;
    var sig_5: MPa;
    var sig_6: MPa;
    var eps_1: dimensionless;
    var eps_2: dimensionless;
    var eps_3: dimensionless;
    var eps_4: dimensionless;
    var eps_5: dimensionless;
    var eps_6: dimensionless;
    var dens_tis: g_per_cm3;
    var vm: dimensionless {pub: in};
    var vo: dimensionless {pub: in};
    var rho_m: g_per_cm3 {pub: in};
    var rho_o: g_per_cm3 {pub: in};
    var fbm: dimensionless {pub: in};
    var fvas: dimensionless;
    var dens: g_per_cm3;
    var dens_1: dimensionless;
    var E_mod: MPa;
    var nu: dimensionless {pub: in};
    var S_11: per_MPa;
    var S_12: per_MPa;
    var S_44: per_MPa;
    var omega: dimensionless {pub: in};
    var valeq: dimensionless;
    var taueq: MPa {pub: in};
    var alphaAct: dimensionless {pub: in};
    var alphaRep: dimensionless {pub: in};
    var gammaAct: dimensionless {pub: in};
    var gammaRep: dimensionless {pub: in};
    var rhoAct: dimensionless {pub: in};
    var rhoRep: dimensionless {pub: in};
    var deltaAct: MPa;
    var deltaRep: MPa;
    sig_1 = 0.0{MPa};
    sig_2 = 0.0{MPa};
    // sig_3 = 0.0{MPa};
    sig_4 = 0.0{MPa};
    sig_5 = 0.0{MPa};
    sig_6 = 0.0{MPa};
    sig_macro = sig_macro_t0+de_sig_macro;
    sig_3 = sig_macro;
    dens_tis = 1{g_per_cm3}+(rho_m-1{g_per_cm3})*vm+(rho_o-1{g_per_cm3})*vo;
    fvas = 1{dimensionless}-fbm/100{dimensionless};
    dens = dens_tis*fbm/100{dimensionless};
    dens_1 = dens/1{g_per_cm3};
    E_mod = sel
      case dens_1 < 1.2{dimensionless}:
        2014{MPa}*pow(dens_1, 2.5{dimensionless});
      otherwise:
        1763{MPa}*pow(dens_1, 3.2{dimensionless});
    endsel;
    // Compute the components of complaince tensor
    // ! Bone is assumed as an isotropic material, so zero elements are ignored here,
    // and only the independent components are calculated
    S_11 = 1{dimensionless}/E_mod;
    S_12 = -nu/E_mod;
    S_44 = (2{dimensionless}+2{dimensionless}*nu)/E_mod;
    // Calculate macroscopic strain using Hooke's law
    eps_1 = S_11*sig_1+S_12*sig_2+S_12*sig_3;
    eps_2 = S_12*sig_1+S_11*sig_2+S_12*sig_3;
    eps_3 = S_12*sig_1+S_12*sig_2+S_11*sig_3;
    eps_4 = S_44*sig_4;
    eps_5 = S_44*sig_5;
    eps_6 = S_44*sig_6;
    // Calculate strain energy density at the continuum level
    SED = 0.5{dimensionless}*(sig_1*eps_1+sig_2*eps_2+sig_3*eps_3+sig_4*eps_4+sig_5*eps_5+sig_6*eps_6);
    // Calculate strain energy density in bone matrix, at the tissue level
    SED_bm = SED/sqr(1{dimensionless}-fvas);
    // Mechancial feedback activator function that accounts for the production of NO by osteocytes
    valeq = omega;
    deltaAct = taueq*pow((alphaAct-valeq)/(valeq-rhoAct), 1{dimensionless}/gammaAct);
    Pi_eps_act = rhoAct+(alphaAct-rhoAct)*pow(SED_bm, gammaAct)/(pow(deltaAct, gammaAct)+pow(SED_bm, gammaAct));
    Pi_eps_act_stst = rhoAct+(alphaAct-rhoAct)*pow(taueq, gammaAct)/(pow(deltaAct, gammaAct)+pow(taueq, gammaAct));
    deltaRep = taueq*pow((valeq-rhoRep)/(alphaRep-valeq), 1{dimensionless}/gammaRep);
    Pi_eps_rep = alphaRep-(alphaRep-rhoRep)*pow(SED_bm, gammaRep)/(pow(deltaRep, gammaRep)+pow(SED_bm, gammaRep));
    Pi_eps_rep_stst = alphaRep-(alphaRep-rhoRep)*pow(taueq, gammaRep)/(pow(deltaRep, gammaRep)+pow(taueq, gammaRep));
  enddef;
  // ---------------------------------------------------------------
  //   Model Parameters
  // ---------------------------------------------------------------

  def comp model_parameters as
    // Cell
    var OBu_t0: pM {init: 0.01, pub: out};
    var OCu_t0: pM {init: 0.01, pub: out};
    // OBp
    var D_OBp_t0: first_order_rate_constant {init: 0.185, pub: out};
    var D_OBu_t0: first_order_rate_constant {init: 0.166, pub: out};
    var pd_OBp_t0: flux {init: 0, pub: out};
    // OBa
    var pd_OBa_t0: flux {init: 0, pub: out};
    var D_OBa_t0: first_order_rate_constant {init: 0.0212, pub: out};
    var A_OBa_t0: first_order_rate_constant {init: 0.1908, pub: out};
    // OCp
    var D_OCu_t0: first_order_rate_constant {init: 0.0219, pub: out};
    var pd_OCp_t0: flux {init: 0, pub: out};
    var D_OCp_t0: first_order_rate_constant {init: 0.01958, pub: out};
    // OCa
    var pd_OCa_t0: flux {init: 0, pub: out};
    var A_OCa_t0: first_order_rate_constant {init: 10, pub: out};
    // Bone matrix fraction
    var K_form: second_order_rate_constant {init: 50, pub: out};
    var K_res: second_order_rate_constant {init: 2500, pub: out};
    // Osteocytes
    var fact_0: pM {init: 0.000414138, pub: out};
    // Mineralization
    var XKAPPA: first_order_rate_constant {init: 0.007, pub: out};
    var vmmax: dimensionless {init: 0.516, pub: out};
    // PTH
    var Beta_PTH: flux {init: 250, pub: out};
    var P_PTH_d: flux {init: 0, pub: out};
    var Deg_PTH: first_order_rate_constant {init: 86, pub: out};
    // var KD_PTH_act: pM {init: 0.899382, pub: out};
    var KD_PTH_act: pM {init: 0.65, pub: out};
    var KD_PTH_rep: pM {init: 0.222581427709954, pub: out};
    // NO_PTH
    var Beta_NO_0: first_order_rate_constant {init: 3440, pub: out};
    var P_NO_d: flux {init: 0, pub: out};
    var Deg_NO: first_order_rate_constant {init: 0.0021, pub: out};
    var NO_max: pM {init: 200000000, pub: out};
    var lambda_s: dimensionless {init: 0.450454, pub: out};
    var lambda_c: dimensionless {init: 0.900909, pub: out};
    // RANK-RANKL-OPG
    var N_RANKL_OBp_max: dimensionless {init: 2703476, pub: out};
    var N_RANK_OCp: dimensionless {init: 4160, pub: out};
    var K_RANK_RANKL: pM {init: 10, pub: out};
    var Beta_OPG: first_order_rate_constant {init: 162490033.783568, pub: out};
    var OPG_max: pM {init: 131.428571428571, pub: out};
    var Deg_OPG: first_order_rate_constant {init: 532608.695652174, pub: out};
    var Deg_OPG_RANKL: first_order_rate_constant {init: 10.132471014805, pub: out};
    var K_OPG_RANKL: pM {init: 0.0151142857142857, pub: out};
    var Beta_RANKL_OCY: first_order_rate_constant {init: 5660, pub: out};
    var Beta_RANKL_OBp: first_order_rate_constant {init: 23600, pub: out};
    var Deg_RANKL: first_order_rate_constant {init: 10.132471014805, pub: out};
    var Deg_RANK_RANKL: first_order_rate_constant {init: 10.132471014805, pub: out};
    var KD_RANKL_act_OCp: pM {init: 3.34, pub: out};
    var KD_RANKL_act_OCu: pM {init: 16.7, pub: out};
    var P_RANKL_d: flux {init: 0, pub: out};
    // TGF-beta
    var Alpha: dimensionless {init: 1, pub: out};
    var KD_TGF_beta_activate: pM {init: 0.000563278809675429, pub: out};
    var KD_TGF_beta_repress: pM {init: 0.000175426051821094, pub: out};
    // Scl
    var Beta_Scl_0: first_order_rate_constant {init: 24000, pub: out};
    var KD_SclLRP5: pM {init: 10, pub: out};
    var Deg_Scl: first_order_rate_constant {init: 1, pub: out};
    var Scl_max: pM {init: 70, pub: out};
    var KD_WntLRP5: pM {init: 1000, pub: out};
    var Deg_SclLRP5: first_order_rate_constant {init: 50, pub: out};
    var LRP5perCell: dimensionless {init: 5, pub: out};
    var P_Scl_d: flux {init: 0, pub: out};
    // Wnt
    var Wnt_0: pM {init: 170, pub: out};
    // Strain energy density
    var sig_macro_t0: MPa {init: 0.50365, pub: out};
    var de_sig_macro: MPa {init: 0, pub: out};
    var vo: dimensionless {init: 0.428571428571428, pub: out};
    var rho_m: g_per_cm3 {init: 3.2, pub: out};
    var rho_o: g_per_cm3 {init: 1.41, pub: out};
    var nu: dimensionless {init: 0.3, pub: out};
    var omega: dimensionless {init: 0.95, pub: out};
    var taueq: MPa {init: 0.006652, pub: out};
    var alphaAct: dimensionless {init: 1, pub: out};
    var alphaRep: dimensionless {init: 1, pub: out};
    var gammaAct: dimensionless {init: 7, pub: out};
    var gammaRep: dimensionless {init: 8.01559, pub: out};
    var rhoAct: dimensionless {init: 0, pub: out};
    var rhoRep: dimensionless {init: 0, pub: out};
  enddef;
  // ---------------------------------------------------------------
  //   Mappings between components for variables that are shared
  // ---------------------------------------------------------------
  def map between OBp and environment for
    vars time and time;
  enddef;
  def map between OBp and model_parameters for
    vars OBu_t0 and OBu_t0;
    vars D_OBp_t0 and D_OBp_t0;
    vars D_OBu_t0 and D_OBu_t0;
    vars pd_OBp_t0 and pd_OBp_t0;
    vars KD_TGF_beta_repress and KD_TGF_beta_repress;
  enddef;
  def map between OBp and OBa for
    vars OBp_out and OBp_out;
  enddef;
  def map between OBp and RANK_RANKL_OPG for
    vars OBp and OBp;
    vars OBp_t0 and OBp_t0;
  enddef;
  def map between OBp and TGF_beta for
    vars Pi_TGFbeta_OBu_act_t0 and Pi_TGFbeta_OBu_act_t0;
    vars Pi_TGFbeta_OBp_rep and Pi_TGFbeta_OBp_rep;
  enddef;
  def map between OBp and Wnt for
    vars Pi_WNT and Pi_WNT;
    vars Pi_WNT_0 and Pi_WNT_0;
  enddef;
  def map between OBp and Scl for
    vars OBp and OBp;
    vars OBp_t0 and OBp_t0;
  enddef;
  def map between OBa and environment for
    vars time and time;
  enddef;
  def map between OBa and model_parameters for
    vars pd_OBa_t0 and pd_OBa_t0;
    vars D_OBa_t0 and D_OBa_t0;
    vars A_OBa_t0 and A_OBa_t0;
  enddef;
  def map between OBa and fbm for
    vars OBa and OBa;
  enddef;
  def map between OBa and vm for
    vars OBa and OBa;
  enddef;
  def map between OBa and RANK_RANKL_OPG for
    vars OBa and OBa;
  enddef;
  def map between OCp and environment for
    vars time and time;
  enddef;
  def map between OCp and model_parameters for
    vars OCu_t0 and OCu_t0;
    vars D_OCu_t0 and D_OCu_t0;
    vars pd_OCp_t0 and pd_OCp_t0;
    vars D_OCp_t0 and D_OCp_t0;
  enddef;
  def map between OCp and OCa for
    vars OCp_out and OCp_out;
  enddef;
  def map between OCp and RANK_RANKL_OPG for
    vars OCp and OCp;
    vars Pi_RANKL_act_OCp and Pi_RANKL_act_OCp;
    vars Pi_RANKL_act_OCu and Pi_RANKL_act_OCu;
  enddef;
  def map between OCa and environment for
    vars time and time;
  enddef;
  def map between OCa and model_parameters for
    vars pd_OCa_t0 and pd_OCa_t0;
    vars A_OCa_t0 and A_OCa_t0;
  enddef;
  def map between OCa and fbm for
    vars OCa and OCa;
  enddef;
  def map between OCa and TGF_beta for
    vars OCa and OCa;
    vars Pi_TGFbeta_OCa_act and Pi_TGFbeta_OCa_act;
  enddef;
  def map between fbm and environment for
    vars time and time;
  enddef;
  def map between fbm and model_parameters for
    vars K_form and K_form;
    vars K_res and K_res;
  enddef;
  def map between fbm and OCY for
    vars fbm and fbm;
    vars dfbmdt and dfbmdt;
  enddef;
  def map between fbm and vm for
    vars fbm and fbm;
  enddef;
  def map between fbm and SED for
    vars fbm and fbm;
  enddef;
  def map between OCY and environment for
    vars time and time;
  enddef;
  def map between OCY and model_parameters for
    vars fact_0 and fact_0;
  enddef;
  def map between OCY and NO_PTH for
    vars OCY_act and OCY_act;
    vars OCY_act_0 and OCY_act_0;
  enddef;
  def map between OCY and RANK_RANKL_OPG for
    vars OCY_act and OCY_act;
  enddef;
  def map between OCY and Scl for
    vars OCY_act and OCY_act;
    vars OCY_act_0 and OCY_act_0;
  enddef;
  def map between vm and environment for
    vars time and time;
  enddef;
  def map between vm and model_parameters for
    vars XKAPPA and XKAPPA;
    vars vmmax and vmmax;
    vars K_form and K_form;
  enddef;
  def map between vm and SED for
    vars vm and vm;
  enddef;
  def map between PTH and model_parameters for
    vars Beta_PTH and Beta_PTH;
    vars P_PTH_d and P_PTH_d;
    vars Deg_PTH and Deg_PTH;
    vars KD_PTH_act and KD_PTH_act;
    vars KD_PTH_rep and KD_PTH_rep;
  enddef;
  def map between PTH and RANK_RANKL_OPG for
    vars Pi_PTH_rep and Pi_PTH_rep;
  enddef;
  def map between NO_PTH and SED for
    vars Pi_eps_act and Pi_eps_act;
    vars Pi_eps_act_stst and Pi_eps_act_stst;
  enddef;
  def map between RANK_RANKL_OPG and model_parameters for
    vars N_RANKL_OBp_max and N_RANKL_OBp_max;
    vars N_RANK_OCp and N_RANK_OCp;
    vars K_RANK_RANKL and K_RANK_RANKL;
    vars Beta_OPG and Beta_OPG;
    vars OPG_max and OPG_max;
    vars Deg_OPG and Deg_OPG;
    vars Deg_OPG_RANKL and Deg_OPG_RANKL;
    vars K_OPG_RANKL and K_OPG_RANKL;
    vars Beta_RANKL_OCY and Beta_RANKL_OCY;
    vars Beta_RANKL_OBp and Beta_RANKL_OBp;
    vars Deg_RANKL and Deg_RANKL;
    vars Deg_RANK_RANKL and Deg_RANK_RANKL;
    vars KD_RANKL_act_OCp and KD_RANKL_act_OCp;
    vars KD_RANKL_act_OCu and KD_RANKL_act_OCu;
    vars P_RANKL_d and P_RANKL_d;
  enddef;
  def map between RANK_RANKL_OPG and NO_PTH for
    vars Pi_NO_PTH_act_rep and Pi_NO_PTH_act_rep;
  enddef;
  def map between TGF_beta and model_parameters for
    vars Alpha and Alpha;
    vars KD_TGF_beta_activate and KD_TGF_beta_activate;
    vars KD_TGF_beta_repress and KD_TGF_beta_repress;
  enddef;
  def map between Scl and model_parameters for
    vars Beta_Scl_0 and Beta_Scl_0;
    vars KD_SclLRP5 and KD_SclLRP5;
    vars Deg_Scl and Deg_Scl;
    vars Scl_max and Scl_max;
    vars KD_WntLRP5 and KD_WntLRP5;
    vars Deg_SclLRP5 and Deg_SclLRP5;
    vars LRP5perCell and LRP5perCell;
    vars P_Scl_d and P_Scl_d;
    vars Wnt_0 and Wnt_0;
  enddef;
  def map between Scl and Wnt for
    vars Wnt and Wnt;
    vars Scl and Scl;
    vars Scl_0 and Scl_0;
  enddef;
  def map between Scl and SED for
    vars Pi_eps_rep and Pi_eps_rep;
    vars Pi_eps_rep_stst and Pi_eps_rep_stst;
  enddef;
  def map between Wnt and model_parameters for
    vars Wnt_0 and Wnt_0;
    vars KD_WntLRP5 and KD_WntLRP5;
    vars KD_SclLRP5 and KD_SclLRP5;
  enddef;
  def map between NO_PTH and model_parameters for
    vars Beta_PTH and Beta_PTH;
    vars Beta_NO_0 and Beta_NO_0;
    vars P_PTH_d and P_PTH_d;
    vars Deg_PTH and Deg_PTH;
    vars P_NO_d and P_NO_d;
    vars Deg_NO and Deg_NO;
    vars NO_max and NO_max;
    vars KD_PTH_act and KD_PTH_act;
    vars lambda_s and lambda_s;
    vars lambda_c and lambda_c;
  enddef;
  def map between SED and model_parameters for
    vars sig_macro_t0 and sig_macro_t0;
    vars de_sig_macro and de_sig_macro;
    vars vo and vo;
    vars rho_m and rho_m;
    vars rho_o and rho_o;
    vars nu and nu;
    vars omega and omega;
    vars taueq and taueq;
    vars alphaAct and alphaAct;
    vars alphaRep and alphaRep;
    vars gammaAct and gammaAct;
    vars gammaRep and gammaRep;
    vars rhoAct and rhoAct;
    vars rhoRep and rhoRep;
  enddef;
enddef;
