<?xml version="1.0"?>
<!--
This CellML file was generated on 8/22/2011 at 11:57:44 at AM using:

COR (0.9.31.1409)
Copyright 2002-2011 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="chauhan_2008" name="chauhan_2008">


<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  <rdf:Description rdf:about="">
    <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
      <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
        <vCard:Family>Nielsen</vCard:Family>
        <vCard:Given>Hanne</vCard:Given>
      </vCard:N>
      <vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
        <rdf:value>hnie010@aucklanduni.ac.nz</rdf:value>
        <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
      </vCard:EMAIL>
      <vCard:ORG xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
        <vCard:Orgname>The University of Auckland</vCard:Orgname>
        <vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
      </vCard:ORG>
    </dc:creator>
    <dcterms:created xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
      <dcterms:W3CDTF>2011-08-22</dcterms:W3CDTF>
    </dcterms:created>
  </rdf:Description>
  <rdf:Description rdf:about="#chauhan_2008">
    <cmeta:species>Human</cmeta:species>
    <cmeta:bio_entity>Liver</cmeta:bio_entity>
    <cmeta:bio_entity>hepatology</cmeta:bio_entity>
    <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
      <dc:subject xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
        <bqs:subject_type>keyword</bqs:subject_type>
        <rdf:value>
          <rdf:Bag>
            <rdf:li>hepatology</rdf:li>
 <rdf:li>hepatocyte</rdf:li>
            <rdf:li>liver</rdf:li>
          </rdf:Bag>
        </rdf:value>
      </dc:subject>
    </bqs:reference>
    <bqs:reference xmlns:bqs="http://www.cellml.org/bqs/1.0#" rdf:parseType="Resource">
      <bqs:Pubmed_id> 18339403 [</bqs:Pubmed_id>
      <bqs:JournalArticle rdf:parseType="Resource">
        <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/">
          <rdf:Seq>
            <rdf:li rdf:parseType="Resource">
              <bqs:Person rdf:parseType="Resource">
                <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                  <vCard:Family>Chauhan</vCard:Family>
                  <vCard:Given>A</vCard:Given>
                </vCard:N>
              </bqs:Person>
            </rdf:li>
            <rdf:li rdf:parseType="Resource">
              <bqs:Person rdf:parseType="Resource">
                <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                  <vCard:Family>Legewie</vCard:Family>
                  <vCard:Given>S</vCard:Given>
                </vCard:N>
              </bqs:Person>
            </rdf:li>
            <rdf:li rdf:parseType="Resource">
              <bqs:Person rdf:parseType="Resource">
                <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                  <vCard:Family>Westermark</vCard:Family>
                  <vCard:Given>P</vCard:Given>
                  <vCard:Other>O</vCard:Other>
                </vCard:N>
              </bqs:Person>
            </rdf:li>
            <rdf:li rdf:parseType="Resource">
              <bqs:Person rdf:parseType="Resource">
                <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                  <vCard:Family>Lorenzen</vCard:Family>
                  <vCard:Given>S</vCard:Given>
                </vCard:N>
              </bqs:Person>
            </rdf:li>
<rdf:li rdf:parseType="Resource">
              <bqs:Person rdf:parseType="Resource">
                <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource">
                  <vCard:Family>Herzel</vCard:Family>
                  <vCard:Given>H</vCard:Given>
                </vCard:N>
              </bqs:Person>
            </rdf:li>
          </rdf:Seq>
        </dc:creator>
        <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">
           A mesoscale model of G1/S phase transition in liver regeneration
          </dc:title>
        <dcterms:issued xmlns:dcterms="http://purl.org/dc/terms/" rdf:parseType="Resource">
          <dcterms:W3CDTF>2011-08-22</dcterms:W3CDTF>
        </dcterms:issued>
        <bqs:Journal rdf:parseType="Resource">
          <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Journal of Theoretical Biology</dc:title>
        </bqs:Journal>
        <bqs:volume>252</bqs:volume>
        <bqs:first_page>465</bqs:first_page>
        <bqs:last_page>473</bqs:last_page>
      </bqs:JournalArticle>
    </bqs:reference>
  </rdf:Description>
</rdf:RDF>



   <units name="hour">
      <unit multiplier="3600" units="second"/>
   </units>
   <units name="per_hour">
      <unit exponent="-1" units="hour"/>
   </units>
   <units name="mole_per_litre">
      <unit units="mole"/>
      <unit exponent="-1" units="litre"/>
   </units>
   <units name="per_mole_per_litre">
      <unit exponent="-1" units="mole_per_litre"/>
   </units>
   <units name="mole_per_litre_per_hour">
      <unit units="mole_per_litre"/>
      <unit exponent="-1" units="hour"/>
   </units>
   <units name="per_mole_per_litre_per_hour">
      <unit exponent="-1" units="mole_per_litre"/>
      <unit exponent="-1" units="hour"/>
   </units>
   <component name="environment">
      <variable cmeta:id="environment_time" name="time" public_interface="out" units="hour"/>
   </component>
   <component name="CycE">
      <variable cmeta:id="CycE_CycE" initial_value="0" name="CycE" public_interface="out" units="mole_per_litre"/>
      <variable name="v91" public_interface="in" units="per_hour"/>
      <variable name="HBEGF" public_interface="in" units="mole_per_litre"/>
      <variable name="k91" public_interface="in" units="mole_per_litre"/>
      <variable name="v92" public_interface="in" units="per_hour"/>
      <variable name="CycD" public_interface="in" units="mole_per_litre"/>
      <variable name="k92" public_interface="in" units="mole_per_litre"/>
      <variable name="d11" public_interface="in" units="per_hour"/>
      <variable name="CycECKI" public_interface="in" units="mole_per_litre"/>
      <variable name="d9" public_interface="in" units="per_hour"/>
      <variable name="deg" public_interface="in" units="mole_per_litre"/>
      <variable name="v11" public_interface="in" units="per_mole_per_litre_per_hour"/>
      <variable name="CKI" public_interface="in" units="mole_per_litre"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CycE</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mole_per_litre">1</cn>
                        <ci>v91</ci>
                        <apply>
                           <power/>
                           <ci>HBEGF</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                        </apply>
                     </apply>
                     <apply>
                        <plus/>
                        <apply>
                           <power/>
                           <ci>k91</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                           <power/>
                           <ci>HBEGF</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mole_per_litre">1</cn>
                        <ci>v92</ci>
                        <apply>
                           <power/>
                           <ci>CycD</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                        </apply>
                     </apply>
                     <apply>
                        <plus/>
                        <apply>
                           <power/>
                           <ci>k92</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                        </apply>
                        <apply>
                           <power/>
                           <ci>CycD</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>d11</ci>
                     <ci>CycECKI</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <ci>d9</ci>
                        <apply>
                           <power/>
                           <ci>deg</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>v11</ci>
                        <ci>CKI</ci>
                     </apply>
                  </apply>
                  <ci>CycE</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="CycD">
      <variable cmeta:id="CycD_CycD" initial_value="0" name="CycD" public_interface="out" units="mole_per_litre"/>
      <variable name="v8" public_interface="in" units="per_hour"/>
      <variable name="IEG" public_interface="in" units="mole_per_litre"/>
      <variable name="HBEGF" public_interface="in" units="mole_per_litre"/>
      <variable name="k8" public_interface="in" units="mole_per_litre"/>
      <variable name="d10" public_interface="in" units="per_hour"/>
      <variable name="d8" public_interface="in" units="per_hour"/>
      <variable name="deg" public_interface="in" units="mole_per_litre"/>
      <variable name="v10" public_interface="in" units="per_mole_per_litre_per_hour"/>
      <variable name="CKI" public_interface="in" units="mole_per_litre"/>
      <variable name="CycDCKI" public_interface="in" units="mole_per_litre"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CycD</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>v8</ci>
                        <ci>IEG</ci>
                        <ci>HBEGF</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>k8</ci>
                        <ci>IEG</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>d10</ci>
                     <ci>CycDCKI</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <ci>d8</ci>
                        <apply>
                           <power/>
                           <apply>
                              <divide/>
                              <ci>deg</ci>
                              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mole_per_litre">1</cn>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1.5</cn>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>v10</ci>
                        <ci>CKI</ci>
                     </apply>
                  </apply>
                  <ci>CycD</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="CycECKI">
      <variable name="v11" public_interface="in" units="per_mole_per_litre_per_hour"/>
      <variable name="CKI" public_interface="in" units="mole_per_litre"/>
      <variable name="CycE" public_interface="in" units="mole_per_litre"/>
      <variable name="d11" public_interface="in" units="per_hour"/>
      <variable initial_value="0" name="CycECKI" public_interface="out" units="mole_per_litre"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CycECKI</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>v11</ci>
                  <ci>CKI</ci>
                  <ci>CycE</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>d11</ci>
                  <ci>CycECKI</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="CycDCKI">
      <variable name="v10" public_interface="in" units="per_mole_per_litre_per_hour"/>
      <variable name="CKI" public_interface="in" units="mole_per_litre"/>
      <variable name="CycD" public_interface="in" units="mole_per_litre"/>
      <variable name="d10" public_interface="in" units="per_hour"/>
      <variable initial_value="0" name="CycDCKI" public_interface="out" units="mole_per_litre"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CycDCKI</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>v10</ci>
                  <ci>CKI</ci>
                  <ci>CycD</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>d10</ci>
                  <ci>CycDCKI</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="CKI">
      <variable cmeta:id="CKI_CKI" initial_value="0" name="CKI" public_interface="out" units="mole_per_litre"/>
      <variable name="v7" public_interface="in" units="per_hour"/>
      <variable name="PIC" public_interface="in" units="mole_per_litre"/>
      <variable name="d10" public_interface="in" units="per_hour"/>
      <variable name="CycDCKI" public_interface="in" units="mole_per_litre"/>
      <variable name="d11" public_interface="in" units="per_hour"/>
      <variable name="CycECKI" public_interface="in" units="mole_per_litre"/>
      <variable name="d7" public_interface="in" units="per_hour"/>
      <variable name="v10" public_interface="in" units="per_mole_per_litre_per_hour"/>
      <variable name="CycD" public_interface="in" units="mole_per_litre"/>
      <variable name="v11" public_interface="in" units="per_mole_per_litre_per_hour"/>
      <variable name="CycE" public_interface="in" units="mole_per_litre"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CKI</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>v7</ci>
                     <ci>PIC</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>d10</ci>
                     <ci>CycDCKI</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>d11</ci>
                     <ci>CycECKI</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>d7</ci>
                     <apply>
                        <times/>
                        <ci>v10</ci>
                        <ci>CycD</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>v11</ci>
                        <ci>CycE</ci>
                     </apply>
                  </apply>
                  <ci>CKI</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="HGF">
      <variable cmeta:id="HGF_HGF" initial_value="0" name="HGF" public_interface="out" units="mole_per_litre"/>
      <variable name="v5" public_interface="in" units="per_mole_per_litre"/>
      <variable name="IEG" public_interface="in" units="mole_per_litre"/>
      <variable name="k5" public_interface="in" units="mole_per_litre"/>
      <variable name="km5" public_interface="in" units="mole_per_litre"/>
      <variable name="PAI" public_interface="in" units="mole_per_litre"/>
      <variable name="f5" public_interface="in" units="mole_per_litre_per_hour"/>
      <variable name="d5" public_interface="in" units="per_hour"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>HGF</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>v5</ci>
                        <ci>IEG</ci>
                     </apply>
                     <apply>
                        <plus/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        <apply>
                           <power/>
                           <apply>
                              <divide/>
                              <ci>PAI</ci>
                              <ci>km5</ci>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mole_per_litre_per_hour">1</cn>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>f5</ci>
                           <ci>HGF</ci>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>k5</ci>
                           <ci>HGF</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>d5</ci>
                  <ci>HGF</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="PGE">
      <variable cmeta:id="PGE_PGE" initial_value="0" name="PGE" public_interface="out" units="mole_per_litre"/>
      <variable name="v2" public_interface="in" units="per_hour"/>
      <variable name="PIC" public_interface="in" units="mole_per_litre"/>
      <variable name="d2" public_interface="in" units="per_hour"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>PGE</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>v2</ci>
                  <ci>PIC</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>d2</ci>
                  <ci>PGE</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="PIC">
      <variable cmeta:id="PIC_PIC" initial_value="0" name="PIC" public_interface="out" units="mole_per_litre"/>
      <variable name="v1" public_interface="in" units="mole_per_litre_per_hour"/>
      <variable name="PGE" public_interface="in" units="mole_per_litre"/>
      <variable name="km1" public_interface="in" units="mole_per_litre"/>
      <variable name="D" public_interface="in" units="mole_per_litre"/>
      <variable name="k1" public_interface="in" units="mole_per_litre"/>
      <variable name="d1" public_interface="in" units="per_hour"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>PIC</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <apply>
                     <divide/>
                     <ci>v1</ci>
                     <apply>
                        <plus/>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        <apply>
                           <power/>
                           <apply>
                              <divide/>
                              <ci>PGE</ci>
                              <ci>km1</ci>
                           </apply>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <divide/>
                     <ci>D</ci>
                     <apply>
                        <plus/>
                        <ci>k1</ci>
                        <ci>D</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>d1</ci>
                  <ci>PIC</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="D">
      <variable name="D" public_interface="out" units="mole_per_litre"/>
      <variable name="I0" public_interface="in" units="mole_per_litre"/>
      <variable name="d0" public_interface="in" units="per_hour"/>
      <variable initial_value="0" name="t" units="hour"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>D</ci>
            <apply>
               <times/>
               <ci>I0</ci>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <ci>d0</ci>
                     </apply>
                     <ci>t</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="deg">
      <variable initial_value="0" name="deg" public_interface="out" units="mole_per_litre"/>
      <variable name="v12" public_interface="in" units="mole_per_litre_per_hour"/>
      <variable name="CycE" public_interface="in" units="mole_per_litre"/>
      <variable name="d12" public_interface="in" units="per_hour"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>deg</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>v12</ci>
                  <apply>
                     <root/>
                     <apply>
                        <divide/>
                        <ci>CycE</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mole_per_litre">1</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>d12</ci>
                  <ci>deg</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="HBEGF">
      <variable cmeta:id="HBEGF_HBEGF" initial_value="0" name="HBEGF" public_interface="out" units="mole_per_litre"/>
      <variable name="v6" public_interface="in" units="mole_per_litre_per_hour"/>
      <variable name="D" public_interface="in" units="mole_per_litre"/>
      <variable name="k61" public_interface="in" units="mole_per_litre"/>
      <variable name="k62" public_interface="in" units="mole_per_litre"/>
      <variable name="k63" public_interface="in" units="mole_per_litre"/>
      <variable name="IEG" public_interface="in" units="mole_per_litre"/>
      <variable name="HGF" public_interface="in" units="mole_per_litre"/>
      <variable name="d6" public_interface="in" units="per_hour"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>HBEGF</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>v6</ci>
                  <apply>
                     <divide/>
                     <apply>
                        <power/>
                        <ci>D</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                     </apply>
                     <apply>
                        <plus/>
                        <apply>
                           <power/>
                           <ci>k61</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                        </apply>
                        <apply>
                           <power/>
                           <ci>D</ci>
                           <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <divide/>
                     <ci>IEG</ci>
                     <apply>
                        <plus/>
                        <ci>k62</ci>
                        <ci>IEG</ci>
                     </apply>
                  </apply>
                  <apply>
                     <divide/>
                     <ci>HGF</ci>
                     <apply>
                        <plus/>
                        <ci>k63</ci>
                        <ci>HGF</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>d6</ci>
                  <ci>HBEGF</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="IEG">
      <variable cmeta:id="IEG_IEG" initial_value="0" name="IEG" public_interface="out" units="mole_per_litre"/>
      <variable name="v3" public_interface="in" units="mole_per_litre_per_hour"/>
      <variable name="PIC" public_interface="in" units="mole_per_litre"/>
      <variable name="k3" public_interface="in" units="mole_per_litre"/>
      <variable name="d3" public_interface="in" units="per_hour"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>IEG</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>v3</ci>
                     <apply>
                        <power/>
                        <ci>PIC</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <apply>
                        <power/>
                        <ci>k3</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                     </apply>
                     <apply>
                        <power/>
                        <ci>PIC</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>d3</ci>
                  <ci>IEG</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="PAI">
      <variable cmeta:id="PAI_PAI" initial_value="0" name="PAI" public_interface="out" units="mole_per_litre"/>
      <variable name="v4" public_interface="in" units="mole_per_litre_per_hour"/>
      <variable name="PIC" public_interface="in" units="mole_per_litre"/>
      <variable name="k4" public_interface="in" units="mole_per_litre"/>
      <variable name="d4" public_interface="in" units="per_hour"/>
      <variable name="time" public_interface="in" units="hour"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>PAI</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>v4</ci>
                     <apply>
                        <power/>
                        <ci>PIC</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <apply>
                        <power/>
                        <ci>k4</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                     </apply>
                     <apply>
                        <power/>
                        <ci>PIC</ci>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>d4</ci>
                  <ci>PAI</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="model_parameters">
      <variable initial_value="4" name="I0" public_interface="out" units="mole_per_litre"/>
      <variable initial_value="0.05" name="d0" public_interface="out" units="per_hour"/>
      <variable initial_value="2" name="v1" public_interface="out" units="mole_per_litre_per_hour"/>
      <variable initial_value="1" name="km1" public_interface="out" units="mole_per_litre"/>
      <variable initial_value="0.5" name="k1" public_interface="out" units="mole_per_litre"/>
      <variable initial_value="0.7" name="d1" public_interface="out" units="per_hour"/>
      <variable initial_value="0.8" name="v2" public_interface="out" units="per_hour"/>
      <variable initial_value="0.01" name="d2" public_interface="out" units="per_hour"/>
      <variable initial_value="6" name="v3" public_interface="out" units="mole_per_litre_per_hour"/>
      <variable initial_value="0.5" name="k3" public_interface="out" units="mole_per_litre"/>
      <variable initial_value="10" name="d3" public_interface="out" units="per_hour"/>
      <variable initial_value="60" name="v4" public_interface="out" units="mole_per_litre_per_hour"/>
      <variable initial_value="0.5" name="k4" public_interface="out" units="mole_per_litre"/>
      <variable initial_value="10" name="d4" public_interface="out" units="per_hour"/>
      <variable initial_value="8.1" name="v5" public_interface="out" units="per_mole_per_litre"/>
      <variable initial_value="5" name="f5" public_interface="out" units="mole_per_litre_per_hour"/>
      <variable initial_value="0.125" name="k5" public_interface="out" units="mole_per_litre"/>
      <variable initial_value="0.18" name="km5" public_interface="out" units="mole_per_litre"/>
      <variable initial_value="0.008" name="d5" public_interface="out" units="per_hour"/>
      <variable initial_value="24" name="v6" public_interface="out" units="mole_per_litre_per_hour"/>
      <variable initial_value="0.9" name="k61" public_interface="out" units="mole_per_litre"/>
      <variable initial_value="0.0005" name="k62" public_interface="out" units="mole_per_litre"/>
      <variable initial_value="1" name="k63" public_interface="out" units="mole_per_litre"/>
      <variable initial_value="0.1" name="d6" public_interface="out" units="per_hour"/>
      <variable initial_value="1.6" name="v7" public_interface="out" units="per_hour"/>
      <variable initial_value="0.3" name="d7" public_interface="out" units="per_hour"/>
      <variable initial_value="0.8" name="v8" public_interface="out" units="per_hour"/>
      <variable initial_value="0.005" name="k8" public_interface="out" units="mole_per_litre"/>
      <variable initial_value="0.002" name="d8" public_interface="out" units="per_hour"/>
      <variable initial_value="0.8" name="v91" public_interface="out" units="per_hour"/>
      <variable initial_value="40" name="k91" public_interface="out" units="mole_per_litre"/>
      <variable initial_value="0.16" name="v92" public_interface="out" units="per_hour"/>
      <variable initial_value="10" name="k92" public_interface="out" units="mole_per_litre"/>
      <variable initial_value="0.0002" name="d9" public_interface="out" units="per_hour"/>
      <variable initial_value="0.8" name="v10" public_interface="out" units="per_mole_per_litre_per_hour"/>
      <variable initial_value="8.1" name="d10" public_interface="out" units="per_hour"/>
      <variable initial_value="800" name="v11" public_interface="out" units="per_mole_per_litre_per_hour"/>
      <variable initial_value="800" name="d11" public_interface="out" units="per_hour"/>
      <variable initial_value="0.56" name="v12" public_interface="out" units="mole_per_litre_per_hour"/>
      <variable initial_value="0.025" name="d12" public_interface="out" units="per_hour"/>
   </component>
   <connection>
      <map_components component_1="CycE" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="CycD" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="CycECKI" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="CycDCKI" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="PIC" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="CKI" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="HGF" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="PGE" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="D" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="deg" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="HBEGF" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="IEG" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="PAI" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="D" component_2="PIC"/>
      <map_variables variable_1="D" variable_2="D"/>
   </connection>
   <connection>
      <map_components component_1="PGE" component_2="PIC"/>
      <map_variables variable_1="PIC" variable_2="PIC"/>
      <map_variables variable_1="PGE" variable_2="PGE"/>
   </connection>
   <connection>
      <map_components component_1="IEG" component_2="PIC"/>
      <map_variables variable_1="PIC" variable_2="PIC"/>
   </connection>
   <connection>
      <map_components component_1="PAI" component_2="PIC"/>
      <map_variables variable_1="PIC" variable_2="PIC"/>
   </connection>
   <connection>
      <map_components component_1="IEG" component_2="HGF"/>
      <map_variables variable_1="IEG" variable_2="IEG"/>
   </connection>
   <connection>
      <map_components component_1="IEG" component_2="HBEGF"/>
      <map_variables variable_1="IEG" variable_2="IEG"/>
   </connection>
   <connection>
      <map_components component_1="IEG" component_2="CycD"/>
      <map_variables variable_1="IEG" variable_2="IEG"/>
   </connection>
   <connection>
      <map_components component_1="PAI" component_2="HGF"/>
      <map_variables variable_1="PAI" variable_2="PAI"/>
   </connection>
   <connection>
      <map_components component_1="HBEGF" component_2="CycE"/>
      <map_variables variable_1="HBEGF" variable_2="HBEGF"/>
   </connection>
   <connection>
      <map_components component_1="HBEGF" component_2="CycD"/>
      <map_variables variable_1="HBEGF" variable_2="HBEGF"/>
   </connection>
   <connection>
      <map_components component_1="HBEGF" component_2="D"/>
      <map_variables variable_1="D" variable_2="D"/>
   </connection>
   <connection>
      <map_components component_1="HBEGF" component_2="HGF"/>
      <map_variables variable_1="HGF" variable_2="HGF"/>
   </connection>
   <connection>
      <map_components component_1="CKI" component_2="CycD"/>
      <map_variables variable_1="CKI" variable_2="CKI"/>
      <map_variables variable_1="CycD" variable_2="CycD"/>
   </connection>
   <connection>
      <map_components component_1="CKI" component_2="CycE"/>
      <map_variables variable_1="CKI" variable_2="CKI"/>
      <map_variables variable_1="CycE" variable_2="CycE"/>
   </connection>
   <connection>
      <map_components component_1="CKI" component_2="CycECKI"/>
      <map_variables variable_1="CKI" variable_2="CKI"/>
      <map_variables variable_1="CycECKI" variable_2="CycECKI"/>
   </connection>
   <connection>
      <map_components component_1="CKI" component_2="CycDCKI"/>
      <map_variables variable_1="CKI" variable_2="CKI"/>
      <map_variables variable_1="CycDCKI" variable_2="CycDCKI"/>
   </connection>
   <connection>
      <map_components component_1="CKI" component_2="PIC"/>
      <map_variables variable_1="PIC" variable_2="PIC"/>
   </connection>
   <connection>
      <map_components component_1="CycD" component_2="CycE"/>
      <map_variables variable_1="CycD" variable_2="CycD"/>
   </connection>
   <connection>
      <map_components component_1="CycD" component_2="CycDCKI"/>
      <map_variables variable_1="CycD" variable_2="CycD"/>
      <map_variables variable_1="CycDCKI" variable_2="CycDCKI"/>
   </connection>
   <connection>
      <map_components component_1="deg" component_2="CycD"/>
      <map_variables variable_1="deg" variable_2="deg"/>
   </connection>
   <connection>
      <map_components component_1="deg" component_2="CycE"/>
      <map_variables variable_1="CycE" variable_2="CycE"/>
      <map_variables variable_1="deg" variable_2="deg"/>
   </connection>
   <connection>
      <map_components component_1="CycECKI" component_2="CycE"/>
      <map_variables variable_1="CycE" variable_2="CycE"/>
      <map_variables variable_1="CycECKI" variable_2="CycECKI"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="CycE"/>
      <map_variables variable_1="v91" variable_2="v91"/>
      <map_variables variable_1="k91" variable_2="k91"/>
      <map_variables variable_1="v92" variable_2="v92"/>
      <map_variables variable_1="k92" variable_2="k92"/>
      <map_variables variable_1="d11" variable_2="d11"/>
      <map_variables variable_1="d9" variable_2="d9"/>
      <map_variables variable_1="v11" variable_2="v11"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="CycD"/>
      <map_variables variable_1="v8" variable_2="v8"/>
      <map_variables variable_1="k8" variable_2="k8"/>
      <map_variables variable_1="d10" variable_2="d10"/>
      <map_variables variable_1="d8" variable_2="d8"/>
      <map_variables variable_1="v10" variable_2="v10"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="CycECKI"/>
      <map_variables variable_1="v11" variable_2="v11"/>
      <map_variables variable_1="d11" variable_2="d11"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="CycDCKI"/>
      <map_variables variable_1="v10" variable_2="v10"/>
      <map_variables variable_1="d10" variable_2="d10"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="CKI"/>
      <map_variables variable_1="v7" variable_2="v7"/>
      <map_variables variable_1="d7" variable_2="d7"/>
      <map_variables variable_1="d10" variable_2="d10"/>
      <map_variables variable_1="d11" variable_2="d11"/>
      <map_variables variable_1="v10" variable_2="v10"/>
      <map_variables variable_1="v11" variable_2="v11"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="HGF"/>
      <map_variables variable_1="v5" variable_2="v5"/>
      <map_variables variable_1="d5" variable_2="d5"/>
      <map_variables variable_1="k5" variable_2="k5"/>
      <map_variables variable_1="f5" variable_2="f5"/>
      <map_variables variable_1="km5" variable_2="km5"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="PGE"/>
      <map_variables variable_1="v2" variable_2="v2"/>
      <map_variables variable_1="d2" variable_2="d2"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="PIC"/>
      <map_variables variable_1="v1" variable_2="v1"/>
      <map_variables variable_1="d1" variable_2="d1"/>
      <map_variables variable_1="k1" variable_2="k1"/>
      <map_variables variable_1="km1" variable_2="km1"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="D"/>
      <map_variables variable_1="I0" variable_2="I0"/>
      <map_variables variable_1="d0" variable_2="d0"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="deg"/>
      <map_variables variable_1="v12" variable_2="v12"/>
      <map_variables variable_1="d12" variable_2="d12"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="HBEGF"/>
      <map_variables variable_1="v6" variable_2="v6"/>
      <map_variables variable_1="d6" variable_2="d6"/>
      <map_variables variable_1="k63" variable_2="k63"/>
      <map_variables variable_1="k62" variable_2="k62"/>
      <map_variables variable_1="k61" variable_2="k61"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="IEG"/>
      <map_variables variable_1="v3" variable_2="v3"/>
      <map_variables variable_1="d3" variable_2="d3"/>
      <map_variables variable_1="k3" variable_2="k3"/>
   </connection>
   <connection>
      <map_components component_1="model_parameters" component_2="PAI"/>
      <map_variables variable_1="v4" variable_2="v4"/>
      <map_variables variable_1="k4" variable_2="k4"/>
      <map_variables variable_1="d4" variable_2="d4"/>
   </connection>
</model>