def model ICC as
  def unit conductance_units as
    unit siemens {pref: nano};
  enddef;
  def unit millifarads as
    unit farad {pref: milli};
  enddef;
  def unit voltage_units as
    unit volt {pref: milli};
  enddef;
  def unit volume_units as
    unit litre;
  enddef;
  def unit Inverse_Voltage as
    unit voltage_units {expo: -1};
  enddef;
  def unit Inverse_Voltage_per_time_units as
    unit Inverse_Voltage;
    unit time_units {expo: -1};
  enddef;
  def unit time_units as
    unit second;
  enddef;
  def unit current_units as
    unit voltage_units;
    unit conductance_units;
  enddef;
  def unit rate_constants_units as
    unit time_units {expo: -1};
  enddef;
  def unit capacitance_units as
    unit farad {pref: nano};
  enddef;
  def unit Temperature_units as
    unit kelvin;
  enddef;
  def unit Inverse_Temperature_units_times_conductance as
    unit Temperature_units {expo: -1};
    unit conductance_units;
  enddef;
  def unit F_units as
    unit mole {expo: -1, pref: nano};
    unit coulomb {pref: micro};
  enddef;
  def unit R_units as
    unit joule {pref: nano};
    unit mole {expo: -1, pref: nano};
    unit kelvin {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit per_micromolar as
    unit litre;
    unit mole {expo: -1, pref: micro};
  enddef;
  def unit per_millimolar as
    unit litre;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimolar_per_second as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_micromolarsecond as
    unit mole {expo: -1, pref: micro};
    unit litre {expo: 1};
    unit second {expo: -1};
  enddef;
  def unit micromolar_per_second as
    unit mole {pref: micro};
    unit litre {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_second_per_millivolt as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit millimole_to_nanomole as
    unit mole {pref: nano};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit microcoulomb_to_picocoulomb as
    unit coulomb {pref: pico};
    unit coulomb {expo: -1, pref: micro};
  enddef;
  def unit micrometer as
    unit meter {pref: micro};
  enddef;
  def unit micrometer2_per_time as
    unit meter {expo: 2, pref: micro};
    unit second {expo: -1};
  enddef;

  def comp Time as
    var time: time_units {priv: out, pub: out};
  enddef;

  def comp model_equations as
    var p2m: dimensionless {init: 1e-9};
    // Conversion factor from pico to milli (or equivalent)
    var umc2L: dimensionless {init: 1e15};
    // Conversion factor from um^3 to litres
    var T: Temperature_units {init: 310};
    var T0: Temperature_units {init: 297};
    var F: F_units {init: 96.4846};
    var R: R_units {init: 8.3144};
    var time: time_units {priv: out, pub: in};
    var z_na: dimensionless {init: 1};
    var z_ca: dimensionless {init: 2};
    var z_k: dimensionless {init: 1};
    var z_cl: dimensionless {init: -1};
    var Ca_i: micromolar {init: 2, pub: out};
    var Ca_o: micromolar {init: 2000};
    var Cl_i: micromolar {init: 78e3};
    var Cl_o: micromolar {init: 166e3};
    var K_i: micromolar {init: 140e3};
    var K_o: micromolar {init: 5e3};
    var Na_i: micromolar {init: 30e3};
    var Na_o: micromolar {init: 140e3};
    var E_Ca: voltage_units {pub: out};
    var E_Cl: voltage_units {pub: out};
    // var E_Cl: voltage_units {init: -20.2};
    var E_Na: voltage_units {pub: out};
    var E_K: voltage_units {pub: out};
    var E_NSCC: voltage_units {init: 0};
    var E_NSV: voltage_units {init: 0};
    var E_SOC: voltage_units {init: 0};
    E_Ca = R*T/(F*z_ca)*ln(Ca_o/Ca_i);
    E_Cl = R*T/(F*z_cl)*ln(Cl_o/Cl_i);
    E_Na = R*T/(F*z_na)*ln(Na_o/Na_i);
    E_K = R*T/(F*z_k)*ln(K_o/K_i);
    // Gating variable parameters
    // T-type Ca2+ channel activation-H(NaV,NSV,CaV)
    var d_CaT_Vh: voltage_units {init: -26};
    var d_CaT_S: voltage_units {init: -6};
    var d_CaT_tau: time_units {init: 0.006};
    var d_CaT_inf: dimensionless {pub: out};
    var d_CaT: dimensionless {init: 0.001271016263081, pub: out};
    d_CaT_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm-d_CaT_Vh)/d_CaT_S));
    ode(d_CaT, time) = (d_CaT_inf-d_CaT)/d_CaT_tau;
    // T-type Ca2+ channel inactivation-H(NaV,NSV,CaV)
    var f_CaT_Vh: voltage_units {init: -66};
    var f_CaT_S: voltage_units {init: 6};
    var f_CaT_tau: time_units {init: 0.04};
    var f_CaT_inf: dimensionless {pub: out};
    var f_CaT: dimensionless {init: 0.5, pub: out};
    f_CaT_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm-f_CaT_Vh)/f_CaT_S));
    ode(f_CaT, time) = (f_CaT_inf-f_CaT)/f_CaT_tau;
    var g_CaT: conductance_units {init: 3};
    var I_CaT: current_units {pub: out};
    I_CaT = g_CaT*d_CaT*f_CaT*(Vm-E_Ca);
    // Calculate ion currents  H(NaV,NSV,CaV)
    var J_CaT: micromolar_per_second {pub: out};
    J_CaT = -p2m*I_CaT/(z_ca*F*volCyto);
    // negative convertsinward current to positive inward flux
    // Nav Na+ channel activation H(NaV)
    var d_Nav_Vh: voltage_units {init: -25};
    var d_Nav_S: voltage_units {init: -5.6};
    var d_Nav_t1: rate_constants_units {init: 50};
    var d_Nav_t2: rate_constants_units {init: 1050};
    var d_Nav_t3: Inverse_Voltage {init: -0.06};
    var d_Nav_t4: voltage_units {init: -20};
    var d_Nav_tau: time_units {pub: out};
    var d_Nav_inf: time_units {pub: out};
    var d_Nav: time_units {init: 0.0006607800216060858, pub: out};
    d_Nav_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm-d_Nav_Vh)/d_Nav_S));
    d_Nav_tau = 1{dimensionless}/(d_Nav_t1+(d_Nav_t2-d_Nav_t1)/(1{dimensionless}+exp(d_Nav_t3*(Vm-d_Nav_t4))));
    ode(d_Nav, time) = (d_Nav_inf-d_Nav)/d_Nav_tau;
    // Nav Na+ channel activation L(NaV)
    // Check tables 2-3 for parameters and equations
    // Nav Na+ channel inactivation L(NaV)
    var f_Nav_Vh: voltage_units {init: -39};
    var f_Nav_S: voltage_units {init: -5.6};
    var f_Nav_tau: time_units {init: 1};
    var f_Nav_inf: time_units {pub: out};
    var f_Nav: time_units {init: 1, pub: out};
    f_Nav_inf = 0.53{dimensionless}/(1{dimensionless}+exp((Vm-f_Nav_Vh)/f_Nav_S))+1{dimensionless}-0.53{dimensionless};
    ode(f_Nav, time) = (f_Nav_inf-f_Nav)/f_Nav_tau;
    var I_Nav: current_units {pub: out};
    var g_Nav: conductance_units {init: 6};
    I_Nav = g_Nav*d_Nav*(Vm-E_Na);
    // Ion current specific to High-Cl(NaV:Voltage-gated Na channel), H(NaV)
    // I_Nav = g_Nav*d_Nav*f_Nav*(Vm-E_Na);//Ion current specific to Low-Cl
    // KV (kt) K+ channel activation (generic voltage-activated K+ channel), L(NaV)
    var d_kv_Vh: voltage_units {init: -20};
    var d_kv_S: voltage_units {init: -4.6};
    var d_kv_tau: time_units {init: 0.045};
    var d_kv: dimensionless {init: 0.01, pub: out};
    var d_kv_inf: dimensionless {pub: out};
    d_kv_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm-d_kv_Vh)/d_kv_S));
    ode(d_kv, time) = (d_kv_inf-d_kv)/d_kv_tau;
    // Kv (kt) K+ channel inactivation (generic voltage-dependent K+ channel) , L(NaV)
    var f_kv_Vh: voltage_units {init: -45};
    var f_kv_S: voltage_units {init: 4.4};
    var f_kv_a: dimensionless {init: 1};
    var f_kv_tau: time_units {init: 0.045};
    var f_kv_inf: dimensionless {pub: out};
    var f_kv: dimensionless {init: 1, pub: out};
    f_kv_inf = f_kv_a/(1{dimensionless}+exp((Vm-f_kv_Vh)/f_kv_S))+1{dimensionless}-f_kv_a;
    ode(f_kv, time) = (f_kv_inf-f_kv)/f_kv_tau;
    var I_kv: current_units {pub: out};
    var g_kv: conductance_units {init: 6};
    I_kv = g_kv*d_kv*f_kv*(Vm-E_K);
    // Ion current specific to Low-Cl L(Nav)
    // ERG K+ channel activation, L(NaV)
    var d_KERG_Vh: voltage_units {init: -35};
    var d_KERG_S: voltage_units {init: -7.1};
    var d_KERG_ta: rate_constants_units {init: 0.15};
    var d_KERG_tV: voltage_units {init: -60};
    var d_KERG_tS: voltage_units {init: 20};
    var d_KERG_tau: time_units {pub: out};
    var d_KERG_inf: dimensionless {pub: out};
    var d_KERG: dimensionless {init: 0.001, pub: out};
    d_KERG_tau = 1{dimensionless}/(1{dimensionless}+1{dimensionless}/(1{dimensionless}+exp(d_KERG_ta*(Vm-d_KERG_tV))));
    d_KERG_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm-d_KERG_Vh)/d_KERG_S));
    ode(d_KERG, time) = (d_KERG_inf-d_KERG)/d_KERG_tau;
    // ERG K+ channel inactivation, L(NaV)
    var f_KERG_Vh: voltage_units {init: -42};
    var f_KERG_S: voltage_units {init: 4};
    var f_KERG_a: dimensionless {init: 1.0};
    var f_KERG_tau: time_units {init: 0.003};
    var f_KERG_inf: dimensionless {pub: out};
    var f_KERG: dimensionless {init: 0.001, pub: out};
    f_KERG_inf = f_KERG_a/(1{dimensionless}+exp((Vm-f_KERG_Vh)/f_KERG_S))+1{dimensionless}-f_KERG_a;
    ode(f_KERG, time) = (f_KERG_inf-f_KERG)/f_KERG_tau;
    var g_KERG: conductance_units {init: 3};
    var I_KERG: current_units {pub: out};
    I_KERG = g_KERG*d_KERG*f_KERG*(Vm-E_K);
    // Ion current specific to Low-Cl,  L(NaV)
    // Voltage-gated Nonselective channel activation-H(NSV)
    var d_NSV_Vh: voltage_units {init: -30};
    var d_NSV_S: voltage_units {init: -5};
    var d_NSV_tau: time_units {init: 0.005};
    var d_NSV_inf: dimensionless {pub: out};
    var d_NSV: dimensionless {init: 0.001271016263081, pub: out};
    d_NSV_inf = 1{dimensionless}/(1{dimensionless}+exp((Vm-d_NSV_Vh)/d_NSV_S));
    ode(d_NSV, time) = (d_NSV_inf-d_NSV)/d_NSV_tau;
    // Voltage-gated Nonselective channel activation-H(NSV)
    var f_NSV_Vh: voltage_units {init: -50};
    var f_NSV_S: voltage_units {init: 5};
    var f_NSV_tau: time_units {init: 0.8};
    var f_NSV_inf: dimensionless {pub: out};
    var f_NSV: dimensionless {init: 0.5, pub: out};
    f_NSV_inf = 0.3{dimensionless}/(1{dimensionless}+exp((Vm-f_NSV_Vh)/f_NSV_S))+1{dimensionless}-0.3{dimensionless};
    ode(f_NSV, time) = (f_NSV_inf-f_NSV)/f_NSV_tau;
    var g_NSV: conductance_units {init: 30};
    var I_NSV: current_units {pub: out};
    I_NSV = g_NSV*d_NSV*f_NSV*(Vm-E_NSV);
    // H(NSV)
    var J_NSV: micromolar_per_second {pub: out};
    J_NSV = -p2m*I_NSV/(z_ca*F*volCyto);
    // BK Ca2+-activated K+ channel, H(NaV,NSV,CaV)
    var g_BK: conductance_units {init: 5};
    // H(NaV,NSV,CaV)
    var I_BK: current_units {pub: out};
    I_BK = g_BK*(Vm-E_K);
    // SOC channel
    // SOC local Ca-dependent inactivation, which can range from 4 to 8
    var g_SOC: conductance_units {init: 0.1};
    // H(NaV,CaV)
    var SOC_h: micromolar {init: 200};
    var SOC_n: dimensionless {init: 8};
    var SOCPropCa: dimensionless {init: 1.0};
    var nSOC: dimensionless {init: 50};
    var P_SOC: dimensionless {pub: out};
    var I_SOC: current_units {pub: out};
    var J_SOC: micromolar_per_second {pub: out};
    P_SOC = 1{dimensionless}/(1{dimensionless}+pow(Ca_er/SOC_h, SOC_n));
    I_SOC = g_SOC*P_SOC*(Vm-E_Ca);
    // H(NaV,CaV)
    J_SOC = -p2m*SOCPropCa*I_SOC/(z_ca*F*volCyto);
    // Na+/Ca2+ exchanger
    var v_NCX: micromolar_per_second {init: 225};
    var J_NCX: micromolar_per_second {pub: out};
    var I_NCX: current_units {pub: out};
    J_NCX = v_NCX*Ca_i/(3.6{dimensionless}+Ca_i);
    I_NCX = z_ca*F*volCyto/(-p2m)*SOCPropCa*J_NCX;
    // PMCA flux, H(NaV, NSV) and L(NaV)
    // Calcium extrusion mechanism
    var J_PMCA_max: micromolar_per_second {init: 50};
    // H(NaV, NSV) and L(NaV)
    var K_PMCA: micromolar {init: 0.1};
    var n_PMCA: dimensionless {init: 2};
    var J_PMCA: micromolar_per_second {pub: out};
    J_PMCA = J_PMCA_max*1{dimensionless}/(1{dimensionless}+pow(K_PMCA/Ca_i, n_PMCA));
    var g_BNa: conductance_units {init: 1};
    var I_BNa: current_units {pub: out};
    I_BNa = g_BNa*(Vm-E_Na);
    var I_stim: current_units {pub: out};
    I_stim = sel
      case (time > 10{time_units}) and (time < 100{time_units}):
        10{current_units};
      otherwise:
        0{dimensionless};
    endsel;
    // Baseline (Nonselective Ca2+-Activated Channel: NSCC)
    var g_NSCC_b: rate_constants_units {init: 0.1};
    var I_NSCC_b: current_units {pub: out};
    var P_NSCC_b: dimensionless {pub: out};
    P_NSCC_b = pow(Ca_i, 4{dimensionless})/(pow(1.8{dimensionless}, 4{dimensionless})+pow(Ca_i, 4{dimensionless}));
    I_NSCC_b = g_NSCC_b*P_NSCC_b*(Vm-E_NSCC);
    var fc: dimensionless {init: 0.01};
    var fe: dimensionless {init: 1};
    // Intracellular volumes
    var cellVol: litre {init: 1.0e-12};
    var cellPropER: dimensionless {init: 0.1};
    var cellPropCyto: dimensionless {init: 0.7};
    var volER: litre {pub: out};
    var volCyto: litre {pub: out};
    volER = cellVol*cellPropER;
    volCyto = cellVol*cellPropCyto;
    // Calculate initial ANO1 open probability
    // Ano1 Ca-activated Cl- channel activation
    var colocalRadius: micrometer {init: 0.05};
    var Dc: micrometer2_per_time {init: 250};
    var Dm: micrometer2_per_time {init: 75};
    var Bm: micromolar {init: 50};
    var Km: micromolar {init: 1};
    var kc: Inverse_Voltage {init: 0.01248};
    var g_Ano1: conductance_units {init: 20};
    // H(NaV, NSV) and L(NaV)
    var Ano1_n: dimensionless {init: 2};
    var Ano1_Vh: voltage_units {init: -100};
    var Ano1_s: voltage_units {init: 0.0156};
    // kv
    var d_Ano1_tscale: dimensionless {init: 1};
    var rad: micrometer;
    var mouthCa: micromolar_per_second {pub: out};
    var d_Ano1_tau: time_units {pub: out};
    var d_Ano1_inf: dimensionless {pub: out};
    var d_Ano1: dimensionless {init: 0.01, pub: out};
    var I_Ano1: current_units {pub: out};
    var localCa: micromolar {pub: out};
    rad = colocalRadius;
    mouthCa = umc2L*J_SOC*volCyto/nSOC;
    localCa = (-Dc*Km+mouthCa/(2{dimensionless}*pi*rad)+Dc*Ca_i-Dm*Bm*Km/(Km+Ca_i)+sqrt(sqr(Dc*Km+mouthCa/(2{dimensionless}*pi*rad)+Dc*Ca_i-Dm*Bm*Km/(Km+Ca_i))+4{dimensionless}*Dc*Dm*Bm*Km))/(2{dimensionless}*Dc);
    d_Ano1_inf = 1{dimensionless}/((1{dimensionless}+exp((Ano1_Vh-Vm)*Ano1_s))*(1{dimensionless}+pow(localCa/(1.39{micromolar}*exp(-kc*Vm)), -Ano1_n)));
    d_Ano1_tau = d_Ano1_tscale*(81.63{time_units}*exp(-0.57{per_micromolar}*localCa)+76.17{time_units}*exp(-0.05374{time_units}*localCa)*exp(Vm/(70.3{Inverse_Voltage}*exp(0.153{per_micromolar}*localCa))))*1e-3{dimensionless};
    ode(d_Ano1, time) = (d_Ano1_inf-d_Ano1)/d_Ano1_tau;
    I_Ano1 = g_Ano1*d_Ano1*(Vm-E_Cl);
    // SERCA
    var Ke: micromolar {init: 0.1};
    var JSERCA: micromolar_per_second {pub: out};
    var JIPR: micromolar_per_second {pub: out};
    var Ve: micromolar_per_second {init: 80};
    JSERCA = Ve*sqr(Ca_i)/(sqr(Ke)+sqr(Ca_i));
    // Calculate ER ion fluxes
    var kipr: rate_constants_units {init: 7};
    var Pipr: dimensionless {pub: out};
    var Jer: rate_constants_units {init: 0.01};
    Pipr = pow(IP3*Ca_i*(1{dimensionless}-y)/((IP3+K1)*(Ca_i+K5)), 3{dimensionless});
    JIPR = (kipr*Pipr+Jer)*(Ca_er-Ca_i);
    var Ca_er: micromolar {init: 290, pub: out};
    ode(Ca_er, time) = fe*(JSERCA-JIPR)*volCyto/volER;
    // IP3R channels in ER
    // for calculating y
    var IP3: micromolar {init: 0.5};
    // receptor binding constants
    var k1: per_micromolarsecond {init: 4000};
    var k2: per_micromolarsecond {init: 2.0};
    var k3: per_micromolarsecond {init: 4000};
    var k4: per_micromolarsecond {init: 2.0};
    var k5: per_micromolarsecond {init: 200};
    var k_1: rate_constants_units {init: 520};
    var k_2: rate_constants_units {init: 2.10};
    var k_3: rate_constants_units {init: 3772};
    var k_4: rate_constants_units {init: 0.29};
    var k_5: rate_constants_units {init: 16.4};
    var K1: micromolar {pub: out};
    var K2: micromolar {pub: out};
    var K3: micromolar {pub: out};
    var K4: micromolar {pub: out};
    var K5: micromolar {pub: out};
    var y: dimensionless {init: 0.4, pub: out};
    var phi1: rate_constants_units;
    var phi2: rate_constants_units;
    K1 = k_1/k1;
    K2 = k_2/k2;
    K3 = k_3/k3;
    K4 = k_4/k4;
    K5 = k_5/k5;
    phi1 = (k_4*K2*K1+k_2*K4*IP3)*Ca_i/(K4*K2*(K1+IP3));
    phi2 = (k_2*IP3+k_4*K3)/(K3+IP3);
    ode(y, time) = phi1*(1{dimensionless}-y)-phi2*y;
    var Iion: current_units {pub: out};
    Iion = I_SOC+I_Ano1+I_CaT+I_Nav+I_BK+I_BNa;
    // H(NaV)
    var Vm: voltage_units {init: -66.0, pub: out};
    var Cm: capacitance_units {init: 0.025};
    ode(Vm, time) = -Iion/Cm;
    ode(Ca_i, time) = fc*(JIPR-JSERCA+J_SOC+J_CaT-J_PMCA);
  enddef;
  def map between Time and model_equations for
    vars time and time;
  enddef;
enddef;
