def model Nima_2018 as
  // electroneutrality maintained also apical and basolateral concentration considered as constant without any equations
  // Basolateral concentration are constant and they are same as high glucose DMEM cell culture
  // No conditon for glucose concentration in the lumen
  // Output of this model then fitted to experimental data
  // water transport added to the curent model
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit per_second2 as
    unit second {expo: -1};
  enddef;
  def unit Mm2 as
    unit M;
    unit m2;
  enddef;
  // def unit per_second5 as
  //     unit second {expo: -5};
  // enddef;
  def unit volt_per_second as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit per_meter as
    unit meter {expo: -1};
  enddef;
  def unit per_volt_per_second as
    unit volt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_volt4_per_second as
    unit volt {expo: -4};
    unit second {expo: -1};
  enddef;
  def unit per_volt3_per_second as
    unit volt {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_volt2_per_second as
    unit volt {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit umol as
    unit mole {pref: micro};
  enddef;
  def unit per_umol as
    unit umol {expo: -1};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit per_M as
    unit M {expo: -1};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit um2 as
    unit metre {expo: 2, pref: micro};
  enddef;
  def unit um as
    unit meter {pref: micro};
  enddef;
  def unit um3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m3_per_mole as
    unit m3;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_second as
    unit m3;
    unit second;
  enddef;
  // def unit litre as
  //     unit m3 {pref: milli};
  // enddef;
  def unit mol_per_um2 as
    unit mole;
    unit um2 {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit J_per_K_per_mol as
    unit mole {expo: -1};
    unit joule;
    unit kelvin {expo: -1};
  enddef;
  def unit pA_per_cm2 as
    unit ampere {pref: pico};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit uA as
    unit ampere {pref: micro};
  enddef;
  def unit uA_per_um2 as
    unit uA;
    unit um2 {expo: -1};
  enddef;
  def unit uA_per_A as
    unit uA;
    unit ampere {expo: -1};
  enddef;
  def unit umol_per_mol as
    unit umol;
    unit mole {expo: -1};
  enddef;
  def unit C_per_mol as
    unit mole {expo: -1};
    unit coulomb;
  enddef;
  def unit per_M_per_second as
    unit M {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_M2_per_second as
    unit M {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit per_M4_per_second2 as
    unit M {expo: -4};
    unit second {expo: -2};
  enddef;
  def unit per_M4_per_second as
    unit M {expo: -4};
    unit second {expo: -1};
  enddef;
  def unit uM as
    unit M {pref: micro};
  enddef;
  def unit M2 as
    unit M {expo: 2};
  enddef;
  def unit M3 as
    unit M {expo: 3};
  enddef;
  def unit M3_per_second as
    unit M {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit per_M3_per_second5 as
    unit M {expo: -3};
    unit second {expo: -5};
  enddef;
  def unit M_per_second as
    unit M;
    unit second {expo: -1};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit cm2_per_s as
    unit cm2;
    unit second {expo: -1};
  enddef;
  def unit mole_per_m2 as
    unit mole;
    unit m2 {expo: -1};
  enddef;
  // def unit uM_per_cm2_per_s as
  //     unit uM;
  //     unit cm2 {expo: -1};
  //     unit second {expo: -1};
  // enddef;
  def unit Farad as
    unit volt {expo: -1};
    unit coulomb;
  enddef;
  def unit uF as
    unit Farad {pref: micro};
  enddef;
  def unit uF_per_cm2 as
    unit Farad {pref: micro};
    unit cm2 {expo: -1};
  enddef;
  def unit umol_per_cm2_per_s as
    unit mole {pref: micro};
    unit cm2 {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit uA_per_cm2 as
    unit uA;
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit m_per_s as
    unit meter;
    unit second {expo: -1};
  enddef;
  def unit m3_mole_per_litre_per_umol as
    unit m3;
    unit mole;
    unit litre {expo: -1};
    unit umol {expo: -1};
  enddef;
  def unit litre_umol_per_mol_per_m3 as
    unit litre;
    unit umol;
    unit mole {expo: -1};
    unit m3 {expo: -1};
  enddef;
  def unit S as
    unit siemens;
  enddef;
  def unit S_per_m2 as
    unit siemens;
    unit m2 {expo: -1};
  enddef;
  def unit per_m2 as
    unit m2 {expo: -1};
  enddef;
  def unit cm_per_s as
    unit cm;
    unit second {expo: -1};
  enddef;

  def comp parameters as
    var z_Cl: dimensionless {init: -1, pub: out};
    var z_Na: dimensionless {init: 1, pub: out};
    var z_k: dimensionless {init: 1, pub: out};
    var F: C_per_mol {init: 96485, pub: out};
    var R: J_per_K_per_mol {init: 8.314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var capacitance: uF {init: 1e-05, pub: out};
    var A_membrane: m2 {init: 7e-10, pub: out};
    // A_membrane = v_cell/2.5e-6{metre};
    var v_cell: m3 {pub: in};
    var P_Na: m_per_s {init: 0, pub: out};
    var P_k: m_per_s {init: 0, pub: out};
    var P_Cl: m_per_s {init: 0, pub: out};
    var P_P_Na: m_per_s {init: 1e-08, pub: out};
    var P_P_k: m_per_s {init: 9e-07, pub: out};
    var P_P_Cl: m_per_s {init: 1e-08, pub: out};
    var P_Bl_Na: m_per_s {init: 0, pub: out};
    var P_Bl_k: m_per_s {init: 0, pub: out};
    var P_Bl_Cl: m_per_s {init: 0, pub: out};
    var time: second {pub: out};
    var k0_12: per_M2_per_second {init: 14000, pub: out};
    var k0_21: per_second {init: 300, pub: out};
    var k0_23: per_M_per_second {init: 15000, pub: out};
    var k0_32: per_second {init: 20, pub: out};
    var k0_25: per_second {init: 0.2, pub: out};
    var k0_52: per_second {init: 0.01, pub: out};
    var k0_34: per_second {init: 50, pub: out};
    var k0_43: per_second {init: 50, pub: out};
    var k0_45: per_second {init: 6, pub: out};
    var k0_54: per_M_per_second {init: 450, pub: out};
    var k0_56: per_second {init: 10, pub: out};
    var k0_65: per_M2_per_second {init: 200, pub: out};
    var k0_61: per_second {init: 25, pub: out};
    var k0_16: per_second {init: 600, pub: out};
    var delta: dimensionless {init: 0.7, pub: out};
    var alpha_p: dimensionless {init: 0.3, pub: out};
    var alpha_pp: dimensionless {init: 0, pub: out};
    // ar N_C: dimensionless {init: 6e10};
    // var N_Avo: per_mol {init: 6.022e23};
    // var C_T: umol {pub: out};
    var n: dimensionless {init: 2, pub: out};
    var z_c: dimensionless {init: -2, pub: out};
    var v_mc: volt {pub: in};
    var mu: dimensionless {pub: out};
    // alpha_p = 1{dimensionless}-delta-alpha_pp;
    // C_T = 1e6{umol_per_mol}*N_C/N_Avo;
    mu = F*v_mc/(R*T);
  enddef;

  def comp Apical_concentrations as
    var Na_m: M {init: 0.15, pub: out};
    var K_m: M {init: 0.0054, pub: out};
    var glucose_m: M {pub: out};
    var Cl_m: M {init: 0.15, pub: out};
    var time: second {pub: in};
    glucose_m = sel
      case (time >= 0{second}) and (time < 5000{second}):
        0{M};
      case time >= 5000{second}:
        0.05{M};
    endsel;
  enddef;

  def comp Apical_voltage as
    var v_mc: volt {init: -0.046, pub: out};
    var time: second {pub: in};
    var capacitance: uF {pub: in};
    // var I_D_Na: uA {pub: in};
    // var I_D_K: uA {pub: in};
    // var I_D_Cl: uA {pub: in};
    var I_D_P_Na: uA {pub: in};
    var I_D_P_K: uA {pub: in};
    var I_D_P_Cl: uA {pub: in};
    var I_NHE3_H: uA {pub: in};
    var I_NHE3_Na: uA {pub: in};
    var I_BK: uA {pub: in};
    // var I_AE1_HCO3: uA {pub: in};
    // var I_AE1_Cl: uA {pub: in};
    var I_ENaC: uA {pub: in};
    // var I_NaCl: uA {pub: in};
    var I_Na_SGLT: uA {pub: in};
    var I_CFTR: uA {pub: in};
    // var I_CFTR_HCO3: uA {pub: in};
    // var I_Gl_SGLT: uA {pub: in};
    ode(v_mc, time) = 1{dimensionless}*(1{dimensionless}*I_Na_SGLT+I_BK+1{dimensionless}*I_CFTR+1{dimensionless}*I_ENaC+1{dimensionless}*(+I_D_P_Na+I_D_P_K+I_D_P_Cl))/capacitance;
  enddef;

  def comp Cell_concentration as
    var Na_i: M {init: 0.045, pub: out};
    // var Na_m: M {pub: in};
    // var Na_s: M {pub: in};
    var glucose_i: M {init: 0.009, pub: out};
    var K_i: M {init: 0.105, pub: out};
    var Ca_i: M {init: 6e-05, pub: out};
    var Cl_i: M {init: 0.057, pub: out};
    var HCO3_i: M {pub: out};
    var H_int: M {pub: out};
    var HCO3_m: M {pub: out};
    var HCO3_s: M {pub: out};
    var H_Ext: M {init: 6.3e-08, pub: out};
    var H_s: M {init: 6.3e-08, pub: out};
    var v_cell: m3 {init: 2e-15, pub: out};
    var A_membrane: m2 {pub: in};
    var J_Na_SGLT: umol_per_s {pub: in};
    var J_Gl_SGLT: umol_per_s {pub: in};
    var J_Na_NaK: umol_per_s {pub: in};
    var J_K_NaK: umol_per_s {pub: in};
    var J_NBC_Na: umol_per_s {pub: in};
    var J_NBC_HCO3: umol_per_s {pub: in};
    // var J_NaCl: umol_per_s {pub: in};
    var J_NHE3_Na: umol_per_s {pub: in};
    var J_NHE3_H: umol_per_s {pub: in};
    // var J_D_Na: umol_per_s {pub: in};
    // var J_D_Bl_Na: umol_per_s {pub: in};
    var J_GLUT: umol_per_s {pub: in};
    var J_A_GLUT: umol_per_s {pub: in};
    // var J_D_K: umol_per_s {pub: in};
    // var J_D_Bl_K: umol_per_s {pub: in};
    // var J_D_Cl: umol_per_s {pub: in};
    // var J_D_Bl_Cl: umol_per_s {pub: in};
    var J_AE1_Cl: umol_per_s {pub: in};
    var J_AE1_HCO3: umol_per_s {pub: in};
    var J_CFTR: umol_per_s {pub: in};
    var J_CLC2: umol_per_s {pub: in};
    // var J_CFTR_HCO3: umol_per_s {pub: in};
    var J_ENaC: umol_per_s {pub: in};
    var J_NaKCC: umol_per_s {pub: in};
    var J_IK: umol_per_s {pub: in};
    var J_BK: umol_per_s {pub: in};
    var J_D_P_Na: umol_per_s {pub: in};
    // var J_buf_C: M_per_second {pub: in};
    // var J_buf_A: M_per_second {pub: in};
    var time: second {pub: in};
    var pH_int: per_second {init: 7.2, pub: out};
    var pH_Ext: per_second {init: 7.2, pub: out};
    var pH_s: per_second {init: 7.2, pub: out};
    var rho: per_meter {init: 1680000, pub: out};
    var beta: M {pub: out};
    var p_K: dimensionless {init: 6.4, pub: out};
    var P_CO2: dimensionless {init: 40, pub: out};
    var s: dimensionless {init: 1e-05, pub: out};
    var theta_1: dimensionless {init: 1};
    var theta_2: dimensionless {init: 1};
    var theta_3: dimensionless {init: 1};
    var theta_4: dimensionless {init: 1};
    var theta_5: dimensionless {init: 1};
    var theta_6: dimensionless {init: 1};
    var theta_7: dimensionless {init: 1};
    var theta_8: dimensionless {init: 1};
    var theta_9: dimensionless {init: 1};
    var theta_10: dimensionless {init: 1};
    var theta_11: dimensionless {init: 1};
    var theta_12: dimensionless {init: 1};
    var theta_13: dimensionless {init: 1};
    var theta_14: dimensionless {init: 1};
    var theta_15: dimensionless {init: 1};
    var theta_16: dimensionless {init: 1};
    var theta_17: dimensionless {init: 1};
    var theta_18: dimensionless {init: 1};
    var theta_19: dimensionless {init: 1};
    var theta_20: dimensionless {init: 1};
    var theta_21: dimensionless {init: 1};
    var theta_22: dimensionless {init: 1};
    var theta_23: dimensionless {init: 1};
    var theta_24: dimensionless {init: 1};
    var theta_25: dimensionless {init: 1};
    var theta_26: dimensionless {init: 1};
    var theta_27: dimensionless {init: 1};
    var v_w: m3_per_mole {init: 1.8e-05, pub: out};
    var J_w_A: umol_per_s {pub: out};
    var J_w_B: umol_per_s {pub: out};
    var J_w_P: umol_per_s {pub: out};
    var J_D_P_Gl: umol_per_s {pub: out};
    var L_A: m_per_s {init: 6e-06, pub: out};
    var L_B: m_per_s {init: 6e-06, pub: out};
    var L_P: m_per_s {init: 4e-07, pub: out};
    var L_P_Gl: m_per_s {init: 3e-10, pub: out};
    var NII: M {pub: out};
    var chi_i: M {pub: out};
    var psi: M {init: 0.001, pub: out};
    var Na_m: M {pub: in};
    var K_m: M {pub: in};
    var glucose_m: M {pub: in};
    var Cl_m: M {pub: in};
    var Na_s: M {pub: in};
    var K_s: M {pub: in};
    var glucose_s: M {pub: in};
    var Cl_s: M {pub: in};
    // var dif: dimensionless {pub: out};
    // var alpha: dimensionless {init: 0.1, pub: out};
    NII = 1e-3{dimensionless}*chi_i/v_cell;
    // chi_i = 1e-3{dimensionless}*(NII * v_cell);
    var alpha_1: dimensionless {init: 1, pub: out};
    var alpha_2: dimensionless {init: 1, pub: out};
    var alpha_3: dimensionless {init: 1, pub: out};
    var alpha_4: dimensionless {init: 1, pub: out};
    var alpha_5: dimensionless {init: 1, pub: out};
    var alpha_6: dimensionless {init: 1, pub: out};
    var alpha_7: dimensionless {init: 1, pub: out};
    var alpha_8: dimensionless {init: 1, pub: out};
    var alpha_9: dimensionless {init: 1, pub: out};
    var alpha_10: dimensionless {init: 1, pub: out};
    var alpha_11: dimensionless {init: 1, pub: out};
    var alpha_12: dimensionless {init: 1, pub: out};
    var alpha_13: dimensionless {init: 1, pub: out};
    var alpha_14: dimensionless {init: 1, pub: out};
    var alpha_15: dimensionless {init: 1, pub: out};
    var OS_A: M {pub: out};
    var OS_C: M {pub: out};
    var OS_B: M {pub: out};
    var A: M {pub: out};
    var B: M {pub: out};
    var Gl_net_P: M {init: 0, pub: out};
    var Gl_net_A: M {init: 0, pub: out};
    var Gl_net_B: M {init: 0, pub: out};
    var Net_gl: M {pub: out};
    var Cell_electroneutrality: M {init: 0, pub: out};
    var Blood_electroneutrality: M {init: 0, pub: out};
    var Lumen_electroneutrality: M {init: 0, pub: out};
    var J_A_Na: umol_per_s {pub: out};
    var J_B_Na: umol_per_s {pub: out};
    // var Concentration_Na: M {pub: out};
    // Concentration_Na = Na_m+Na_i+Na_s;
    // var K_g: per_second {init: 0.0015, pub: out};
    // dif = v_w*(J_w_B-J_w_A);
    // ode(dif,time) = 150{dimensionless};
    // var K_g: per_second {init: 0.0015, pub: out};
    //         Lumen_electroneutrality = -(Cl_m+HCO3_m)+Na_m+K_m;
    // Cell_electroneutrality = -(Cl_i+HCO3_i+NII)+Na_i+K_i;
    // Blood_electroneutrality = -(Cl_s+HCO3_s)+Na_s+K_s;
    HCO3_s = Na_s+K_s-Blood_electroneutrality-Cl_s;
    HCO3_m = Na_m+K_m-Lumen_electroneutrality-Cl_m;
    // NII = Na_i+K_i-Cell_electroneutrality-Cl_i-HCO3_i;
    J_A_Na = J_Na_SGLT+J_ENaC+J_NHE3_Na;
    J_B_Na = -J_Na_NaK+J_NaKCC+J_NBC_Na;
    chi_i = Na_i+K_i-Cell_electroneutrality-Cl_i-HCO3_i;
    A = OS_C;
    B = (OS_A+OS_B)/2{dimensionless};
    OS_A = Cl_m+HCO3_m+Na_m+K_m+glucose_m;
    OS_C = Cl_i+HCO3_i+Na_i+K_i+chi_i+glucose_i;
    OS_B = Cl_s+HCO3_s+Na_s+K_s+glucose_s;
    // psi = 2{dimensionless}*(Cl_i+HCO3_i+Na_i+K_i+chi_c+glucose_i)-(Cl_s+HCO3_s+Na_s+K_s+glucose_s)-(Cl_m+HCO3_m+Na_m+K_m+glucose_m);
    beta = 2.3{dimensionless}*HCO3_i*A_membrane;
    ode(Na_i, time) = 1e-9{m3_mole_per_litre_per_umol}/v_cell*(theta_1*J_Na_SGLT-theta_2*J_Na_NaK+theta_15*J_ENaC+theta_16*J_NaKCC+theta_19*J_NBC_Na+theta_3*J_NHE3_Na-Na_i*1e9{dimensionless}*ode(v_cell, time));
    ode(glucose_i, time) = 1e-9{m3_mole_per_litre_per_umol}/v_cell*(theta_26*1{dimensionless}*J_A_GLUT+theta_6*J_Gl_SGLT-theta_7*1{dimensionless}*J_GLUT-glucose_i*1e9{dimensionless}*ode(v_cell, time));
    ode(K_i, time) = 1e-9{m3_mole_per_litre_per_umol}/v_cell*(theta_8*J_K_NaK+theta_17*J_NaKCC+theta_27*J_IK+J_BK-K_i*1e9{dimensionless}*ode(v_cell, time));
    ode(Cl_i, time) = 1e-9{m3_mole_per_litre_per_umol}/v_cell*(-theta_11*J_CFTR-J_CLC2+theta_18*2{dimensionless}*J_NaKCC+theta_14*J_AE1_Cl-Cl_i*1e9{dimensionless}*ode(v_cell, time));
    // ode(HCO3_i, time) = 1e-9{m3_mole_per_litre_per_umol}/v_cell*theta_20*J_NBC_HCO3+theta_25*J_AE1_HCO3+theta_21*J_buf_C;
    // psi = (J_w_B - (ode(v_cell,time)/(1e-6{umole_per_mole}*v_w)) - 1e9{dimensionless}*L_A*A_membrane*(alpha_1*Na_m+alpha_2*Cl_m+alpha_3*glucose_m+alpha_4*K_m+alpha_5*HCO3_m-(alpha_6*Na_i+alpha_7*Cl_i+alpha_8*glucose_i+alpha_9*K_i+alpha_10*HCO3_i+chi_c)))/(1e9{dimensionless}*L_A*A_membrane);
    ode(pH_int, time) = 1e-9{m3_mole_per_litre_per_umol}*rho/beta*(theta_20*J_NBC_HCO3-theta_22*J_NHE3_H-theta_25*J_AE1_HCO3);
    ode(v_cell, time) = 1e-6{umole_per_mole}*v_w*(J_w_B-J_w_A);
    J_w_A = 1e9{dimensionless}*L_A*A_membrane*(alpha_1*Na_m+alpha_2*Cl_m+alpha_3*glucose_m+alpha_4*K_m+alpha_5*HCO3_m-(alpha_6*Na_i+alpha_7*Cl_i+alpha_8*glucose_i+alpha_9*K_i+alpha_10*HCO3_i+chi_i)+psi);
    J_w_B = 1e9{dimensionless}*L_B*A_membrane*(alpha_6*Na_i+alpha_7*Cl_i+alpha_8*glucose_i+alpha_9*K_i+alpha_10*HCO3_i-(alpha_11*Na_s+alpha_12*Cl_s+alpha_13*glucose_s+alpha_14*K_s+alpha_15*HCO3_s)+chi_i);
    J_w_P = 1e9{dimensionless}*L_P*A_membrane*(alpha_1*Na_m+alpha_2*Cl_m+alpha_3*glucose_m+alpha_4*K_m+alpha_5*HCO3_m+psi-(alpha_11*Na_s+alpha_12*Cl_s+alpha_13*glucose_s+alpha_14*K_s+alpha_15*HCO3_s));
    J_D_P_Gl = 1e9{dimensionless}*L_P_Gl*A_membrane*(glucose_m-glucose_s);
    ode(Gl_net_A, time) = 1e-9{m3_mole_per_litre_per_umol}/v_cell*(theta_26*J_A_GLUT+theta_6*J_Gl_SGLT)-glucose_i/(1e3{dimensionless}*v_cell)*1e-6{dimensionless}*v_w*(J_w_B-J_w_A);
    ode(Gl_net_B, time) = 1e-9{m3_mole_per_litre_per_umol}/v_cell*(-theta_7)*J_GLUT-glucose_i/(1e3{dimensionless}*v_cell)*1e-6{dimensionless}*v_w*(J_w_B-J_w_A);
    Net_gl = J_A_GLUT+J_Gl_SGLT-J_GLUT;
    // J_D_P_Gl = 1e9{dimensionless}*alpha*L_P*A_membrane*(OS_A-OS_B);
    // J_D_P_Gl = alpha*J_w_P;
    // ode(Gl_net_P, time) = J_D_P_Gl;
    H_int = pow(10{dimensionless}, -pH_int);
    HCO3_i = s*P_CO2*pow(10{dimensionless}, pH_int-p_K);
  enddef;

  def comp Blood_concentrations as
    var Cl_s: M {init: 0.15, pub: out};
    var K_s: M {init: 0.0054, pub: out};
    var Na_s: M {init: 0.15, pub: out};
    var glucose_s: M {init: 0.004, pub: out};
    var Q_in: m3_per_second {init: 8e-17, pub: out};
    var Q_out: m3_per_second {pub: out};
    var v_B: m3 {init: 1e-16, pub: out};
    var glucose_in: M {init: 0.005, pub: out};
    var Cl_in: M {init: 0.15, pub: out};
    var time: second {pub: in};
    var J_GLUT: umol_per_s {pub: in};
    // var Number: dimensionless {init: 4000000000};
    var Na_in: M {init: 0.15, pub: out};
    var J_Na_NaK: umol_per_s {pub: in};
    var J_NBC_Na: umol_per_s {pub: in};
    var J_NaKCC: umol_per_s {pub: in};
    var J_D_P_Na: umol_per_s {pub: in};
    var K_in: M {init: 0.0054, pub: out};
    // var K_out: M {init: 0.0055, pub: out};
    var J_K_NaK: umol_per_s {pub: in};
    var J_D_P_K: umol_per_s {pub: in};
    var J_IK: umol_per_s {pub: in};
    var J_CLC2: umol_per_s {pub: in};
    var J_D_P_Cl: umol_per_s {pub: in};
    var J_D_P_Gl: umol_per_s {pub: in};
    var v_w1: m3_per_mole {init: 1.8e-05, pub: out};
    var J_w_B: umol_per_s {pub: in};
    var J_w_P: umol_per_s {pub: in};
    Q_out = Q_in-1e-6{umole_per_mole}*v_w1*(+J_w_P+J_w_B);
    // ode(v_B, time) = 1e-6{umole_per_mole}*v_w1*(-J_w_P-J_w_B);
    ode(glucose_s, time) = 1{dimensionless}/v_B*(Q_in*glucose_in-Q_out*glucose_s+1e-9{mole_per_umol}*(J_GLUT+J_D_P_Gl));
    ode(Na_s, time) = 1{dimensionless}/v_B*(Q_in*Na_in-Q_out*Na_s+1e-9{mole_per_umol}*(1{dimensionless}*J_Na_NaK-1{dimensionless}*J_NBC_Na-1{dimensionless}*J_NaKCC+1{dimensionless}*J_D_P_Na));
    ode(K_s, time) = 1{dimensionless}/v_B*(Q_in*K_in-Q_out*K_s+1e-9{mole_per_umol}*(-1{dimensionless}*J_K_NaK-1{dimensionless}*J_NaKCC+1{dimensionless}*J_D_P_K-1{dimensionless}*J_IK));
    ode(Cl_s, time) = 1{dimensionless}/v_B*(Q_in*Cl_in-Q_out*Cl_s+1e-9{mole_per_umol}*(J_CLC2-2{dimensionless}*J_NaKCC-J_D_P_Cl));
  enddef;

  def comp Basol_voltage as
    var v_sc: volt {init: -0.05, pub: out};
    var time: second {pub: in};
    var capacitance: uF {pub: in};
    var I_Na_NaK: uA {pub: in};
    var I_K_NaK: uA {pub: in};
    var I_D_P_Na: uA {pub: in};
    var I_D_P_K: uA {pub: in};
    var I_D_P_Cl: uA {pub: in};
    var I_NBC_Na: uA {pub: in};
    var I_NBC_HCO3: uA {pub: in};
    var I_IK: uA {pub: in};
    var I_CLC2: uA {pub: in};
    // var I_GLUT: uA {pub: in};
    ode(v_sc, time) = 1{dimensionless}*(I_CLC2+(-I_Na_NaK)+I_K_NaK+1{dimensionless}*I_NBC_Na-1{dimensionless}*I_NBC_HCO3-1{dimensionless}*I_D_P_Na-1{dimensionless}*I_D_P_K-1{dimensionless}*I_D_P_Cl+1{dimensionless}*I_IK)/capacitance;
  enddef;

  def comp rate_constants as
    var Na_i: M {pub: in};
    var Na_m: M {pub: in};
    var glucose_i: M {pub: in};
    var glucose_m: M {pub: in};
    // var k_12: per_second {pub: out};
    var ks_12: per_M2_per_second {pub: out};
    var k_21: per_second {pub: out};
    // var k_23: per_second {pub: out};
    var k_32: per_second {pub: out};
    var k_25: per_second {pub: out};
    var k_52: per_second {pub: out};
    var k_34: per_second {pub: out};
    var k_43: per_second {pub: out};
    var k_45: per_second {pub: out};
    var k_54: per_second {pub: out};
    var k_56: per_second {pub: out};
    var k_65: per_second {pub: out};
    var k_61: per_second {pub: out};
    var k_16: per_second {pub: out};
    var k0_12: per_M2_per_second {pub: in};
    var k0_21: per_second {pub: in};
    // var k0_23: per_M_per_second {pub: in};
    var k0_32: per_second {pub: in};
    var k0_25: per_second {pub: in};
    var k0_52: per_second {pub: in};
    var k0_34: per_second {pub: in};
    var k0_43: per_second {pub: in};
    var k0_45: per_second {pub: in};
    var k0_54: per_M_per_second {pub: in};
    // var k0_25: per_second {pub: in};
    // var k0_52: per_second {pub: in};
    var k0_56: per_second {pub: in};
    var k0_65: per_M2_per_second {pub: in};
    var k0_61: per_second {pub: in};
    var k0_16: per_second {pub: in};
    // var k0_54_temp: per_M_per_second {pub: out};
    // var k_52_temp: per_second {pub: out};
    var delta: dimensionless {pub: in};
    var n: dimensionless {pub: in};
    var z_c: dimensionless {pub: in};
    var z_Na: dimensionless {pub: in};
    var alpha_p: dimensionless {pub: in};
    // var alpha_pp: dimensionless {pub: in};
    // var C_T: umol {pub: in};
    var mu: dimensionless {pub: in};
    ks_12 = k0_12*exp(-n*alpha_p*mu/2{dimensionless});
    // k_12 = ks_12*pow(Na_m, n);
    // k_12 = k0_12*exp(-alpha_p*mu)*sqr(Na_m);
    k_21 = k0_21*exp(n*z_Na*alpha_p*mu/2{dimensionless});
    // k_23 = k0_23*glucose_m;
    k_32 = k0_32;
    k_34 = k0_34;
    k_43 = k0_43;
    k_45 = k0_45;
    k_54 = k0_54*glucose_i;
    k_25 = k0_25;
    // k_52_temp = k0_52*exp((z_c+n)*delta*mu/2{dimensionless});
    k_56 = k0_56;
    k_65 = k0_65*sqr(Na_i);
    k_61 = k0_61*exp(z_c*delta*mu/2{dimensionless});
    k_16 = k0_16*exp(-z_c*delta*mu/2{dimensionless});
    k_52 = k0_52;
    // k0_54_temp = k0_23*k_34*k_45/(k_43*k_32);
  enddef;

  def comp phenomonological_constants as
    var epsilon: per_second {pub: out};
    var lambda: per_M3_per_second5 {pub: out};
    var chi: M {pub: out};
    var alpha: M3 {pub: out};
    var beta: M2 {pub: out};
    var gamma: M3_per_second {pub: out};
    var phi: M_per_second {pub: out};
    // var k_12: per_second {pub: in};
    var k_21: per_second {pub: in};
    // var k_23: per_second {pub: in};
    var k_32: per_second {pub: in};
    var k_34: per_second {pub: in};
    var k_43: per_second {pub: in};
    var k_45: per_second {pub: in};
    var k_54: per_second {pub: in};
    var k_25: per_second {pub: in};
    var k_52: per_second {pub: in};
    var k_56: per_second {pub: in};
    var k_65: per_second {pub: in};
    var k_61: per_second {pub: in};
    var k_16: per_second {pub: in};
    var ks_12: per_M2_per_second {pub: in};
    var k0_23: per_M_per_second {pub: in};
    // var C_T: umol {pub: in};
    var F: C_per_mol {pub: in};
    var Na_m: M {pub: in};
    var glucose_m: M {pub: in};
    var n_SGLT: dimensionless {init: 60000000, pub: out};
    var J_Na_SGLT: umol_per_s {pub: out};
    var I_Na_SGLT: uA {pub: out};
    var J_Gl_SGLT: umol_per_s {pub: out};
    var J_GL_SGLT1: umol_per_s {pub: out};
    // var I_Gl_SGLT: uA {pub: out};
    lambda = ks_12*k0_23*k_43*k_54*k_65+ks_12*k0_23*k_34*k_54*k_65+ks_12*k0_23*k_45*k_52*k_65+ks_12*k0_23*k_43*k_52*k_65+ks_12*k0_23*k_34*k_52*k_65+ks_12*k0_23*k_34*k_45*k_65+ks_12*k0_23*k_45*k_56*k_61+ks_12*k0_23*k_43*k_56*k_61+ks_12*k0_23*k_34*k_56*k_61+ks_12*k0_23*k_43*k_54*k_61+ks_12*k0_23*k_34*k_54*k_61+ks_12*k0_23*k_45*k_52*k_61+ks_12*k0_23*k_43*k_52*k_61+ks_12*k0_23*k_34*k_52*k_61+ks_12*k0_23*k_34*k_45*k_61+ks_12*k0_23*k_34*k_45*k_56;
    chi = 1{dimensionless}/lambda*(ks_12*k_32*k_43*k_54*k_65+ks_12*k_25*k_43*k_54*k_65+ks_12*k_25*k_34*k_54*k_65+ks_12*k_25*k_32*k_54*k_65+ks_12*k_34*k_45*k_52*k_65+ks_12*k_32*k_45*k_52*k_65+ks_12*k_32*k_43*k_52*k_65+ks_12*k_25*k_34*k_45*k_65+ks_12*k_25*k_32*k_45*k_65+ks_12*k_25*k_32*k_43*k_65+ks_12*k_34*k_45*k_56*k_61+ks_12*k_32*k_45*k_56*k_61+ks_12*k_32*k_43*k_56*k_61+ks_12*k_32*k_43*k_54*k_61+ks_12*k_25*k_43*k_54*k_61+ks_12*k_25*k_34*k_54*k_61+ks_12*k_25*k_32*k_54*k_61+ks_12*k_34*k_45*k_52*k_61+ks_12*k_32*k_45*k_52*k_61+ks_12*k_32*k_43*k_52*k_61+ks_12*k_25*k_34*k_45*k_61+ks_12*k_25*k_32*k_45*k_61+ks_12*k_25*k_32*k_43*k_61+ks_12*k_25*k_34*k_45*k_56+ks_12*k_25*k_32*k_45*k_56+ks_12*k_25*k_32*k_43*k_56);
    beta = 1{dimensionless}/lambda*(k0_23*k_16*k_43*k_54*k_65+k0_23*k_16*k_34*k_54*k_65+k0_23*k_16*k_45*k_52*k_65+k0_23*k_16*k_43*k_52*k_65+k0_23*k_16*k_34*k_52*k_65+k0_23*k_16*k_34*k_45*k_65+k0_23*k_34*k_45*k_56*k_61+k0_23*k_16*k_34*k_45*k_56);
    alpha = 1{dimensionless}/lambda*(k_21*k_32*k_43*k_54*k_65+k_16*k_32*k_43*k_54*k_65+k_16*k_25*k_43*k_54*k_65+k_16*k_21*k_43*k_54*k_65+k_16*k_25*k_34*k_54*k_65+k_16*k_21*k_34*k_54*k_65+k_16*k_25*k_32*k_54*k_65+k_16*k_21*k_32*k_54*k_65+k_21*k_34*k_45*k_52*k_65+k_16*k_34*k_45*k_52*k_65+k_21*k_32*k_45*k_52*k_65+k_16*k_32*k_45*k_52*k_65+k_21*k_32*k_43*k_52*k_65+k_16*k_32*k_43*k_52*k_65+k_16*k_25*k_34*k_45*k_65+k_16*k_21*k_34*k_45*k_65+k_16*k_25*k_32*k_45*k_65+k_16*k_21*k_32*k_45*k_65+k_16*k_25*k_32*k_43*k_65+k_16*k_21*k_32*k_43*k_65+k_25*k_34*k_45*k_56*k_61+k_21*k_34*k_45*k_56*k_61+k_25*k_32*k_45*k_56*k_61+k_21*k_32*k_45*k_56*k_61+k_25*k_32*k_43*k_56*k_61+k_21*k_32*k_43*k_56*k_61+k_21*k_32*k_43*k_54*k_61+k_21*k_34*k_45*k_52*k_61+k_21*k_32*k_45*k_52*k_61+k_21*k_32*k_43*k_52*k_61+k_16*k_25*k_34*k_45*k_56+k_16*k_21*k_34*k_45*k_56+k_16*k_25*k_32*k_45*k_56+k_16*k_21*k_32*k_45*k_56+k_16*k_25*k_32*k_43*k_56+k_16*k_21*k_32*k_43*k_56+k_16*k_21*k_32*k_43*k_54+k_16*k_21*k_34*k_45*k_52+k_16*k_21*k_32*k_45*k_52+k_16*k_21*k_32*k_43*k_52);
    gamma = 1{dimensionless}/lambda*k_16*k_21*k_65*(k_32*k_43*k_54+k_34*k_45*k_52+k_32*k_45*k_52+k_32*k_43*k_52);
    phi = -1{dimensionless}/lambda*ks_12*k_56*k_61*(k_25*k_34*k_45+k_25*k_32*k_45+k_25*k_32*k_43);
    epsilon = -1{dimensionless}/lambda*ks_12*k0_23*k_34*k_45*k_56*k_61;
    J_Na_SGLT = -2{dimensionless}*n_SGLT/6.023e17{per_umol}*(epsilon*sqr(Na_m)*glucose_m+phi*sqr(Na_m)+gamma)/(alpha+beta*glucose_m+chi*sqr(Na_m)+sqr(Na_m)*glucose_m);
    I_Na_SGLT = J_Na_SGLT*F;
    J_Gl_SGLT = 1{dimensionless}/2{dimensionless}*J_Na_SGLT;
    // to change the unit to picomol/hour
    J_GL_SGLT1 = J_Gl_SGLT*36e8{dimensionless};
    // I_Gl_SGLT = -J_Gl_SGLT*F;
  enddef;

  def comp CFTR as
    var z_Cl: dimensionless {pub: in};
    var R: J_per_K_per_mol {pub: in};
    var T: kelvin {pub: in};
    var Cl_i: M {pub: in};
    var Cl_m: M {pub: in};
    var V_A_Cl: volt {pub: out};
    // var V_A_HCO3: volt {pub: out};
    var v_mc: volt {pub: in};
    var J_CFTR: umol_per_s {pub: out};
    var J_CFTR1: umol_per_s {pub: out};
    // var J_CFTR_HCO3: umol_per_s {pub: out};
    var I_CFTR: uA {pub: out};
    // var I_CFTR_HCO3: uA {pub: out};
    var A_membrane: m2 {pub: in};
    var F: C_per_mol {pub: in};
    var G_CFTR: S_per_m2 {init: 1.2, pub: out};
    // var HCO3_i: M {pub: in};
    // var HCO3_m: M {pub: in};
    // var z_HCO3: dimensionless {init: -1, pub: out};
    // alpha is multipled by area in order to have a dimensionless unit
    // var alpha_CFTR: per_m2 {init: 0.1, pub: out};
    J_CFTR = I_CFTR/F;
    J_CFTR1 = J_CFTR*36e8{dimensionless};
    V_A_Cl = R*T/(z_Cl*F)*ln(Cl_m/Cl_i);
    I_CFTR = -1e6{dimensionless}*G_CFTR*A_membrane*(v_mc-V_A_Cl);
    // V_A_HCO3 = R*T/(z_HCO3*F)*ln(HCO3_m/HCO3_i);
    // I_CFTR_HCO3 = 0.25e6{dimensionless}*G_CFTR*A_membrane*(v_mc-V_A_HCO3);
    // J_CFTR_HCO3 = I_CFTR_HCO3/F;
  enddef;

  def comp CLC2 as
    var z_Cl: dimensionless {pub: in};
    var R: J_per_K_per_mol {pub: in};
    var T: kelvin {pub: in};
    var Cl_i: M {pub: in};
    var Cl_s: M {pub: in};
    var V_A_Cl: volt {pub: out};
    var v_sc: volt {pub: in};
    var J_CLC2: umol_per_s {pub: out};
    var I_CLC2: uA {pub: out};
    var A_membrane: m2 {pub: in};
    var F: C_per_mol {pub: in};
    var G_CLC2: S_per_m2 {init: 1, pub: out};
    // alpha is multipled by area in order to have a dimensionless unit
    // var alpha_CFTR: per_m2 {init: 0.1, pub: out};
    J_CLC2 = I_CLC2/F;
    V_A_Cl = R*T/(z_Cl*F)*ln(Cl_s/Cl_i);
    I_CLC2 = -1e6{dimensionless}*G_CLC2*A_membrane*(v_sc-V_A_Cl);
  enddef;

  def comp ENaC as
    var z_Na: dimensionless {pub: in};
    var R: J_per_K_per_mol {pub: in};
    var T: kelvin {pub: in};
    var Na_i: M {pub: in};
    var Na_m: M {pub: in};
    var V_A_Na: volt {pub: out};
    var v_mc: volt {pub: in};
    var J_ENaC: umol_per_s {pub: out};
    var J_ENaC1: umol_per_s {pub: out};
    var I_ENaC: uA {pub: out};
    var A_membrane: m2 {pub: in};
    var F: C_per_mol {pub: in};
    var G_ENaC: S_per_m2 {init: 1.6, pub: out};
    // alpha is not multipled by area in order to have a dimensionless unit, so the unit is actually 1/m2, it's necessary to the same for CFTR as well
    // var alpha_ENaC: per_m2 {init: 0.1, pub: out};
    J_ENaC = I_ENaC/F;
    J_ENaC1 = J_ENaC*36e8{dimensionless};
    V_A_Na = R*T/(z_Na*F)*ln(Na_m/Na_i);
    I_ENaC = -1e+6{dimensionless}*G_ENaC*A_membrane*(v_mc-V_A_Na);
  enddef;

  def comp NaKCC as
    var A_membrane: m2 {pub: in};
    var S_C: M {pub: out};
    var J_NaKCC: umol_per_s {pub: out};
    var I_NaKCC: uA {pub: out};
    var Na_i: M {pub: in};
    var K_i: M {pub: in};
    var Cl_i: M {pub: in};
    var F: C_per_mol {pub: in};
    var u_NaKCC: per_second {pub: out};
    var gamma_1: per_second2 {init: 157.55, pub: out};
    var gamma_2: per_M4_per_second2 {init: 20000000, pub: out};
    var gamma_3: per_second {init: 1.03, pub: out};
    var gamma_4: per_M4_per_second {init: 1380000, pub: out};
    var alpha_NaKCC: mole_per_m2 {init: 1e-09, pub: out};
    S_C = Na_i*Cl_i*Cl_i*K_i;
    u_NaKCC = (gamma_1-gamma_2*S_C)/(gamma_3+gamma_4*S_C);
    J_NaKCC = 1e6{dimensionless}*alpha_NaKCC*u_NaKCC*A_membrane;
    I_NaKCC = J_NaKCC*F;
  enddef;

  def comp A_GLUT2 as
    var K_12: per_M_per_second {init: 1000, pub: out};
    var K_21: per_second {init: 12.6, pub: out};
    var K_23: per_second {init: 1350, pub: out};
    var K_32: per_second {init: 90, pub: out};
    var K_34: per_second {init: 12.6, pub: out};
    var K_43: per_M_per_second {init: 1000, pub: out};
    var K_41: per_second {init: 0.8, pub: out};
    var K_14: per_second {init: 12, pub: out};
    // var C_1:  M {init: 1e-3, pub: out};
    // var C_2:  M {init: 0, pub: out};
    var glucose_i: M {pub: in};
    var glucose_m: M {pub: in};
    // var CS_1:  M {pub: out};
    // var CS_2:  M {pub: out};
    var K_S: M {pub: out};
    var J_A_GLUT: umol_per_s {pub: out};
    var C_tot: umol {pub: out};
    var n_GLUT: dimensionless {init: 2e8, pub: out};
    var D: per_second {pub: out};
    var J_A_GLUT1: umol_per_s {pub: out};
    // var time: second {init: 0, pub: out};
    var v_cell: m3 {pub: in};
    // var I_GLUT: uA {pub: out};
    // var n_GLUT: dimensionless {init: 13.2e7};
    // var F: C_per_mol {pub: in};
    // D = sel
    //     case (glucose_m > 0.02{M}):
    //         (1{dimensionless}+glucose_i/K_S)*(K_32*glucose_m/K_S+K_41)+(1{dimensionless}+glucose_m/K_S)*(K_23*glucose_i/K_S+K_14);
    //     case glucose_m < 0.02{M}:
    //         1e100{per_second};
    // endsel;
    C_tot = n_GLUT/6.022e17{per_umole};
    K_S = K_21/K_12;
    // CS_1 = C_tot* ((K_32*(S_2)/K_S) + K_41)*(S_1/K_S);
    // CS_2 = C_tot* ((K_23*(S_1)/K_S) + K_14)*(S_2/K_S);
    J_A_GLUT = C_tot/D*(K_32*K_14*glucose_m/K_S-K_23*K_41*glucose_i/K_S);
    J_A_GLUT1 = J_A_GLUT*36e8{dimensionless};
    D = (1{dimensionless}+glucose_m/K_S)*(K_23*glucose_i/K_S+K_14)+(1{dimensionless}+glucose_i/K_S)*(K_32*glucose_m/K_S+K_41);
  enddef;

  def comp GLUT2 as
    var K_12: per_M_per_second {init: 1000, pub: out};
    var K_21: per_second {init: 12.6, pub: out};
    var K_23: per_second {init: 1350, pub: out};
    var K_32: per_second {init: 90, pub: out};
    var K_34: per_second {init: 12.6, pub: out};
    var K_43: per_M_per_second {init: 1000, pub: out};
    var K_41: per_second {init: 0.8, pub: out};
    var K_14: per_second {init: 12, pub: out};
    // var C_1:  M {init: 1e-3, pub: out};
    // var C_2:  M {init: 0, pub: out};
    var glucose_i: M {pub: in};
    var glucose_s: M {pub: in};
    // var CS_1:  M {pub: out};
    // var CS_2:  M {pub: out};
    var K_S: M {pub: out};
    var J_GLUT: umol_per_s {pub: out};
    var C_tot: umol {pub: out};
    var n_GLUT: dimensionless {init: 2e8, pub: out};
    var D: per_second {pub: out};
    var J_GLUT1: umol_per_s {pub: out};
    // var time: second {init: 0, pub: out};
    var v_cell: m3 {pub: in};
    // var I_GLUT: uA {pub: out};
    // var n_GLUT: dimensionless {init: 13.2e7};
    // var F: C_per_mol {pub: in};
    C_tot = n_GLUT/6.022e17{per_umole};
    K_S = K_21/K_12;
    // CS_1 = C_tot* ((K_32*(S_2)/K_S) + K_41)*(S_1/K_S);
    // CS_2 = C_tot* ((K_23*(S_1)/K_S) + K_14)*(S_2/K_S);
    J_GLUT = C_tot/D*(K_23*K_41*glucose_i/K_S-K_32*K_14*glucose_s/K_S);
    J_GLUT1 = J_GLUT*36e8{dimensionless};
    D = (1{dimensionless}+glucose_i/K_S)*(K_32*glucose_s/K_S+K_41)+(1{dimensionless}+glucose_s/K_S)*(K_23*glucose_i/K_S+K_14);
  enddef;

  def comp NaK_channel as
    // var time: second {pub: in};
    var v_sc: volt {pub: in};
    var F: C_per_mol {pub: in};
    var K_s: M {pub: in};
    var Na_i: M {pub: in};
    var TO_NaK: per_second {pub: out};
    var n_NaK: dimensionless {init: 5000000, pub: out};
    var K_Na_i_half: M {init: 0.01, pub: out};
    var K_K_s_half: M {init: 0.0015, pub: out};
    var I_Na_NaK: uA {pub: out};
    var I_K_NaK: uA {pub: out};
    var J_NaK: umol_per_s {pub: out};
    var J_Na_NaK: umol_per_s {pub: out};
    var J_K_NaK: umol_per_s {pub: out};
    // var J_K_NaK: umol_per_s {pub: out};
    I_K_NaK = J_K_NaK*F;
    I_Na_NaK = J_Na_NaK*F;
    J_NaK = TO_NaK*n_NaK/6.023e17{per_umol}*pow(Na_i, 1.36{dimensionless})*1.13{dimensionless}/(pow(K_Na_i_half, 1.36{dimensionless})+pow(Na_i, 1.36{dimensionless}))*1.3{dimensionless}*K_s/(K_K_s_half+K_s);
    TO_NaK = 5.46e+4{per_volt4_per_second}*pow(v_sc, 4{dimensionless})-2.43e+2{per_volt3_per_second}*pow(v_sc, 3{dimensionless})-2e+3{per_volt2_per_second}*sqr(v_sc)+160{per_volt_per_second}*v_sc+51{per_second};
    J_Na_NaK = 3{dimensionless}*J_NaK;
    J_K_NaK = 2{dimensionless}*J_NaK;
    // J_Na_NaK = -108e8{dimensionless}*J_NaK;
    // J_K_NaK = -72e8{dimensionless}*J_NaK;
  enddef;

  def comp NBC as
    var time: second {pub: in};
    var A_membrane: m2 {pub: in};
    var v_sc: volt {pub: in};
    var v_cell: m3 {pub: in};
    var Na_i: M {pub: in};
    var Na_s: M {pub: in};
    var HCO3_i: M {pub: in};
    var HCO3_s: M {pub: in};
    var g_NBC: S_per_m2 {init: 0.08, pub: out};
    var F: C_per_mol {pub: in};
    var R: J_per_K_per_mol {pub: in};
    var T: kelvin {pub: in};
    // kelvin {init: 300};
    var n: dimensionless {init: 2};
    // var eps: M {init: 1e-12};
    var E_NBC: volt {pub: out};
    var J_NBC_Na: umol_per_s {pub: out};
    var J_NBC_HCO3: umol_per_s {pub: out};
    var I_NBC_Na: uA {pub: out};
    var I_NBC_HCO3: uA {pub: out};
    var eps: M {init: 1e-18};
    E_NBC = R*T/((1{dimensionless}-n)*F)*ln(Na_s/Na_i*sqr(HCO3_s)/sqr(HCO3_i));
    I_NBC_Na = 1e6{dimensionless}*g_NBC*A_membrane*(v_sc-E_NBC);
    I_NBC_HCO3 = 3.0{dimensionless}*I_NBC_Na;
    J_NBC_Na = I_NBC_Na/F;
    J_NBC_HCO3 = I_NBC_HCO3/F;
  enddef;

  def comp NHE3 as
    var A_membrane: m2 {pub: in};
    var v_cell: m3 {pub: in};
    var Na_m: M {pub: in};
    var Na_i: M {pub: in};
    var H_Ext: M {pub: in};
    var H_int: M {pub: in};
    var NH4_ext: M {init: 0, pub: out};
    var NH4_int: M {init: 0, pub: out};
    var J_NHE3_Na: umol_per_s {pub: out};
    var J_NHE3_H1: umol_per_s {pub: out};
    var J_NHE3_H: umol_per_s {pub: out};
    var J_NHE3_NH4: umol_per_s {pub: out};
    var J_NHE3_Na_Max: umol_per_s {pub: out};
    var I_NHE3_H: uA {pub: out};
    var I_NHE3_Na: uA {pub: out};
    var x_T: M {init: 0.001};
    var sigma: per_second;
    var P_Na: per_second;
    var P_H: per_second;
    var P_NH4: per_second;
    var P0_Na: per_second {init: 1.6};
    var P0_H: per_second {init: 0.48};
    var P0_NH4: per_second {init: 1.6};
    var K_Na: M {init: 0.03};
    var K_H: M {init: 7.2e-08};
    var K_NH4: M {init: 0.027};
    var K_I: M {init: 1e-09};
    var f_m: dimensionless {init: 0};
    var f_M: dimensionless {init: 2};
    var alpha_ext_Na: dimensionless;
    var alpha_int_Na: dimensionless;
    var beta_ext_H: dimensionless;
    var beta_int_H: dimensionless;
    var gamma_ext_NH4: dimensionless;
    var gamma_int_NH4: dimensionless;
    var F: C_per_mol {pub: in};
    // var pH_Ext: dimensionless;
    // var pH_int: dimensionless;
    // var p_K: dimensionless {init: 6.1, pub: out};
    // var P_CO2: dimensionless {init: 40, pub: out};
    // var s: dimensionless {init: 0.03e-3, pub: out};
    // var HCO3_i: M {pub: in};
    // var HCO3_m: M {pub: in};
    // pH_Ext = p_K+log(HCO3_m/(s*P_CO2));
    // pH_int = p_K+log(HCO3_i/(s*P_CO2));
    alpha_ext_Na = Na_m/K_Na;
    alpha_int_Na = Na_i/K_Na;
    beta_ext_H = H_Ext/K_H;
    beta_int_H = H_int/K_H;
    gamma_ext_NH4 = NH4_ext/K_NH4;
    gamma_int_NH4 = NH4_int/K_NH4;
    P_Na = P0_Na*(f_M*H_int+f_m*K_I)/(H_int+K_I);
    P_H = P0_H*(f_M*H_int+f_m*K_I)/(H_int+K_I);
    P_NH4 = P0_NH4*(f_M*H_int+f_m*K_I)/(H_int+K_I);
    sigma = (1{dimensionless}+alpha_ext_Na+beta_ext_H+gamma_ext_NH4)*(P_Na*alpha_int_Na+P_H*beta_int_H+P_NH4*gamma_int_NH4)+(1{dimensionless}+alpha_int_Na+beta_int_H+gamma_int_NH4)*(P_Na*alpha_ext_Na+P_H*beta_ext_H+P_NH4*gamma_ext_NH4);
    J_NHE3_Na = -1e9{dimensionless}*v_cell*x_T/sigma*(P_Na*P_H*(alpha_int_Na*beta_ext_H-alpha_ext_Na*beta_int_H)+P_Na*P_NH4*(alpha_int_Na*gamma_ext_NH4-alpha_ext_Na*gamma_int_NH4));
    J_NHE3_H = -1e9{dimensionless}*v_cell*x_T/sigma*(P_Na*P_H*(alpha_ext_Na*beta_int_H-alpha_int_Na*beta_ext_H)+P_H*P_NH4*(beta_int_H*gamma_ext_NH4-beta_ext_H*gamma_int_NH4));
    J_NHE3_H1 = J_NHE3_H*36e8{dimensionless};
    J_NHE3_NH4 = x_T/sigma*(P_Na*P_NH4*(alpha_ext_Na*gamma_int_NH4-alpha_int_Na*gamma_ext_NH4)+P_H*P_NH4*(beta_ext_H*gamma_int_NH4-gamma_ext_NH4*beta_int_H));
    J_NHE3_Na_Max = x_T*P_Na*P_H/(P_Na+P_H);
    I_NHE3_H = J_NHE3_H*F;
    I_NHE3_Na = J_NHE3_Na*F;
  enddef;

  def comp AE1 as
    // var A_membrane: m2 {pub: in};
    var A_membrane: m2 {pub: in};
    var v_cell: m3 {pub: in};
    var HCO3_i: M {pub: in};
    var HCO3_m: M {pub: in};
    var Cl_i: M {pub: in};
    var Cl_m: M {pub: in};
    var J_AE1_HCO3: umol_per_s {pub: out};
    // var J_AE1_HCO31: umol_per_s {pub: out};
    var J_AE1_Cl: umol_per_s {pub: out};
    // var J_AE1_Cl1: umol_per_s {pub: out};
    var I_AE1_HCO3: uA {pub: out};
    var I_AE1_Cl: uA {pub: out};
    var J_HCO3_influx: umol_per_s {pub: out};
    var J_Cl_influx: umol_per_s {pub: out};
    var K_HCO3_m: M {init: 0.198};
    var K_HCO3_i: M {init: 0.198};
    var K_Cl_s: M {init: 0.05};
    var K_Cl_i: M {init: 0.05};
    var P_HCO3_m: per_second {init: 1247};
    var P_HCO3_i: per_second {init: 135};
    var P_Cl_s: per_second {init: 562};
    var P_Cl_i: per_second {init: 61};
    var beta_ext: dimensionless;
    var beta_int: dimensionless;
    var gamma_ext: dimensionless;
    var gamma_int: dimensionless;
    var sigma: per_second;
    var x_Tmax: M {init: 0.001};
    var K_I: M {init: 0.172};
    var x_T: M;
    var x_ext: M;
    var x_int: M;
    var Jo_bm: umol_per_s;
    var Ji_bm: umol_per_s;
    var Js_bm: umol_per_s;
    var Jo_cm: umol_per_s;
    var Ji_cm: umol_per_s;
    var Js_cm: umol_per_s;
    var F: C_per_mol {pub: in};
    x_T = x_Tmax/(1{dimensionless}+HCO3_i/K_I);
    beta_ext = HCO3_m/K_HCO3_m;
    beta_int = HCO3_i/K_HCO3_i;
    gamma_ext = Cl_m/K_Cl_s;
    gamma_int = Cl_i/K_Cl_i;
    sigma = (1{dimensionless}+beta_ext+gamma_ext)*(P_HCO3_i*beta_int+P_Cl_i*gamma_int)+(1{dimensionless}+beta_int+gamma_int)*(P_HCO3_m*beta_ext+P_Cl_s*gamma_ext);
    J_AE1_HCO3 = 1e9{dimensionless}*v_cell*x_Tmax/sigma*(P_HCO3_i*beta_int*P_Cl_s*gamma_ext-P_HCO3_m*beta_ext*P_Cl_i*gamma_int);
    // J_AE1_HCO31 = J_AE1_HCO3*36e8{dimensionless};
    // J_AE1_Cl1 = -J_AE1_HCO31;
    J_AE1_Cl = J_AE1_HCO3;
    I_AE1_HCO3 = J_AE1_HCO3*F;
    I_AE1_Cl = J_AE1_Cl*F;
    x_ext = x_T*(P_HCO3_i*beta_int+P_Cl_i*gamma_int)/sigma;
    x_int = x_T*(P_HCO3_m*beta_ext+P_Cl_s*gamma_ext)/sigma;
    J_HCO3_influx = x_T/sigma*P_HCO3_m*beta_ext*(P_HCO3_i*beta_int+P_Cl_i*gamma_int);
    J_Cl_influx = x_T/sigma*P_Cl_s*gamma_ext*(P_HCO3_i*beta_int+P_Cl_i*gamma_int);
    Jo_bm = pow(1{dimensionless}/x_T*(1{dimensionless}/P_HCO3_m+1{dimensionless}/P_HCO3_i+K_HCO3_i/(P_HCO3_i*HCO3_i)), -1{dimensionless});
    Ji_bm = pow(1{dimensionless}/x_T*(1{dimensionless}/P_HCO3_m+1{dimensionless}/P_HCO3_i+K_HCO3_m/(P_HCO3_m*HCO3_m)), -1{dimensionless});
    Js_bm = pow(1{dimensionless}/x_T*(1{dimensionless}/P_HCO3_m+1{dimensionless}/P_HCO3_i), -1{dimensionless});
    Jo_cm = pow(1{dimensionless}/x_T*(1{dimensionless}/P_Cl_s+1{dimensionless}/P_Cl_i+K_Cl_i/(P_Cl_i*Cl_i)), -1{dimensionless});
    Ji_cm = pow(1{dimensionless}/x_T*(1{dimensionless}/P_Cl_s+1{dimensionless}/P_Cl_i+K_Cl_s/(P_Cl_s*Cl_m)), -1{dimensionless});
    Js_cm = pow(1{dimensionless}/x_T*(1{dimensionless}/P_Cl_s+1{dimensionless}/P_Cl_i), -1{dimensionless});
  enddef;
  // def comp Hydration as
  //     var time: second {pub: in};
  //     var v_cell: m3 {pub: in};
  //     var CO2_i: M {init: 1e-3, pub: out};
  //     var CO2_s: M {init: 1.2e-3, pub: out};
  //     var CO2_m: M {init: 1.2e-3, pub: out};
  //     var H_int: M {pub: in};
  //     var H_Ext: M {pub: in};
  //     var HCO3_i: M {pub: in};
  //     var HCO3_m: M {pub: in};
  //     var p_CO2: per_second {init: 5e-6, pub: out};
  //     var k_f: per_second {init: 0.03, pub: out};
  //     var k_r: per_M_per_second {init: 20e-3, pub: out};
  //     var J_CDF_A: umol_per_s {pub: out};
  //     var J_CDF_B: umol_per_s {pub: out};
  //     var J_buf_C: umol_per_s {pub: out};
  //     var J_buf_C1: umol_per_s {pub: out};
  //     var J_buf_A: umol_per_s {pub: out};
  //     var J_D_P_CO2: umol_per_s {pub: in};
  //     J_CDF_A = -1e9{dimensionless}*v_cell*p_CO2*(CO2_i-CO2_m);
  //     J_CDF_B = 1e9{dimensionless}*v_cell*p_CO2*(CO2_i-CO2_s);
  //     J_buf_C = 1e9{dimensionless}*v_cell*(k_f*CO2_i-k_r*HCO3_i*H_int);
  //     J_buf_C1 = J_buf_C*36e8{dimensionless};
  //     J_buf_A = 1e9{dimensionless}*v_cell*(k_f*CO2_m-k_r*HCO3_m*H_Ext);
  //     ode(CO2_i, time) = -J_buf_C+J_CDF_A+J_CDF_B;
  //     ode(CO2_m, time) = -J_buf_A-J_CDF_A-0{dimensionless}*J_D_P_CO2;
  // enddef;

  def comp IK as
    var z_k: dimensionless {pub: in};
    var R: J_per_K_per_mol {pub: in};
    var T: kelvin {pub: in};
    var K_i: M {pub: in};
    var K_s: M {pub: in};
    var Ca_i: M {pub: in};
    var V_A_IK: volt {pub: out};
    var v_sc: volt {pub: in};
    var J_IK: umol_per_s {pub: out};
    var I_IK: uA {pub: out};
    var A_membrane: m2 {pub: in};
    var F: C_per_mol {pub: in};
    var G_IK: S_per_m2 {init: 2.1, pub: out};
    // var P_IK: dimensionless {pub: out};
    var K_s_IK: M {init: 0.0003, pub: out};
    var eta: dimensionless {init: 1.7, pub: out};
    // alpha is not multipled by area in order to have a dimensionless unit, so the unit is actually 1/m2, it's necessary to the same for CFTR as well
    // var alpha_IK: per_m2 {init: 1, pub: out};
    // P_IK = 1{dimensionless}/(1{dimensionless}+pow(K_s_IK/Ca_i, eta));
    V_A_IK = R*T/(z_k*F)*ln(K_s/K_i);
    I_IK = -1e+6{dimensionless}*G_IK*A_membrane*(v_sc-V_A_IK);
    J_IK = I_IK/F;
  enddef;

  def comp BK as
    var z_k: dimensionless {pub: in};
    var R: J_per_K_per_mol {pub: in};
    var T: kelvin {pub: in};
    var K_i: M {pub: in};
    var K_m: M {pub: in};
    var Ca_i: M {pub: in};
    var V_A_BK: volt {pub: out};
    var v_mc: volt {pub: in};
    var J_BK: umol_per_s {pub: out};
    var I_BK: uA {pub: out};
    var A_membrane: m2 {pub: in};
    var F: C_per_mol {pub: in};
    var G_BK: S_per_m2 {init: 0.8, pub: out};
    var P_BK: dimensionless {pub: out};
    var K_s_BK: M {init: 0.0003, pub: out};
    var eta: dimensionless {init: 1.7, pub: out};
    // alpha is not multipled by area in order to have a dimensionless unit, so the unit is actually 1/m2, it's necessary to the same for CFTR as well
    // var alpha_BK: per_m2 {init: 0.1, pub: out};
    P_BK = 1{dimensionless}/(1{dimensionless}+pow(K_s_BK/Ca_i, eta));
    V_A_BK = R*T/(z_k*F)*ln(K_m/K_i);
    I_BK = -1e+6{dimensionless}*G_BK*P_BK*A_membrane*(v_mc-V_A_BK);
    J_BK = I_BK/F;
  enddef;
  // def comp Apical_Diffusion as
  //     var v_mc: volt {pub: in};
  //     var Na_m: M {pub: in};
  //     var K_m: M {pub: in};
  //     var Cl_m: M {pub: in};
  //     var Na_i: M {pub: in};
  //     var K_i: M {pub: in};
  //     var Cl_i: M {pub: in};
  //     var F: C_per_mol {pub: in};
  //     var z_Na: dimensionless {pub: in};
  //     var z_k: dimensionless {pub: in};
  //     var z_Cl: dimensionless {pub: in};
  //     var R: J_per_K_per_mol {pub: in};
  //     var A_membrane: m2 {pub: in};
  //     var T: kelvin {pub: in};
  //     var P_Na: m_per_s {pub: in};
  //     var P_k: m_per_s {pub: in};
  //     var P_Cl: m_per_s {pub: in};
  //     var J_D_Na: umol_per_s {pub: out};
  //     var J_D_NA: umol_per_s {pub: out};
  //     var I_D_Na: uA {pub: out};
  //     var J_D_K: umol_per_s {pub: out};
  //     var I_D_K: uA {pub: out};
  //     var J_D_Cl: umol_per_s {pub: out};
  //     var I_D_Cl: uA {pub: out};
  //     var J_D_Apical: umol_per_s {pub: out};
  //     J_D_Na = -1e9{litre_umol_per_mol_per_m3}*P_Na*F*z_Na*v_mc/(R*T)*(Na_m-Na_i*exp(z_Na*F*v_mc/(R*T)))/(1{dimensionless}-exp(z_Na*F*v_mc/(R*T)))*A_membrane;
  //     J_D_NA = 36e8{dimensionless}*J_D_Na;
  //     I_D_Na = J_D_Na*F;
  //     J_D_K = -1e9{litre_umol_per_mol_per_m3}*P_k*F*z_k*v_mc/(R*T)*(K_m-K_i*exp(z_k*F*v_mc/(R*T)))/(1{dimensionless}-exp(z_k*F*v_mc/(R*T)))*A_membrane;
  //     I_D_K = J_D_K*F;
  //     J_D_Cl = -1e9{litre_umol_per_mol_per_m3}*P_Cl*F*z_Cl*v_mc/(R*T)*(Cl_m-Cl_i*exp(z_Cl*F*v_mc/(R*T)))/(1{dimensionless}-exp(z_Cl*F*v_mc/(R*T)))*A_membrane;
  //     I_D_Cl = J_D_Cl*F;
  //     J_D_Apical = J_D_Na+J_D_K+J_D_Cl;
  // enddef;
  // def comp Basolateral_Diffusion as
  //     var v_sc: volt {pub: in};
  //     var Na_s: M {pub: in};
  //     var K_s: M {pub: in};
  //     var Cl_s: M {pub: in};
  //     var Na_i: M {pub: in};
  //     var K_i: M {pub: in};
  //     var Cl_i: M {pub: in};
  //     var F: C_per_mol {pub: in};
  //     var z_Na: dimensionless {pub: in};
  //     var z_k: dimensionless {pub: in};
  //     var z_Cl: dimensionless {pub: in};
  //     var R: J_per_K_per_mol {pub: in};
  //     var A_Basol: m2 {pub: in};
  //     var T: kelvin {pub: in};
  //     var P_Bl_Na: m_per_s {pub: in};
  //     var P_Bl_k: m_per_s {pub: in};
  //     var P_Bl_Cl: m_per_s {pub: in};
  //     var J_D_Bl_Na: umol_per_s {pub: out};
  //     var I_D_Bl_Na: uA {pub: out};
  //     var J_D_Bl_K: umol_per_s {pub: out};
  //     var I_D_Bl_K: uA {pub: out};
  //     var J_D_Bl_Cl: umol_per_s {pub: out};
  //     var I_D_Bl_Cl: uA {pub: out};
  //     var J_D_Basolateral: umol_per_s {pub: out};
  //     J_D_Bl_Na = -1e9{litre_umol_per_mol_per_m3}*P_Bl_Na*F*z_Na*v_sc/(R*T)*(Na_s-Na_i*exp(z_Na*F*v_sc/(R*T)))/(1{dimensionless}-exp(z_Na*F*v_sc/(R*T)))*A_Basol;
  //     I_D_Bl_Na = J_D_Bl_Na*F;
  //     J_D_Bl_K = -1e9{litre_umol_per_mol_per_m3}*P_Bl_k*F*z_k*v_sc/(R*T)*(K_s-K_i*exp(z_k*F*v_sc/(R*T)))/(1{dimensionless}-exp(z_k*F*v_sc/(R*T)))*A_Basol;
  //     I_D_Bl_K = J_D_Bl_K*F;
  //     J_D_Bl_Cl = -1e9{litre_umol_per_mol_per_m3}*P_Bl_Cl*F*z_Cl*v_sc/(R*T)*(Cl_s-Cl_i*exp(z_Cl*F*v_sc/(R*T)))/(1{dimensionless}-exp(z_Cl*F*v_sc/(R*T)))*A_Basol;
  //     I_D_Bl_Cl = J_D_Bl_Cl*F;
  //     J_D_Basolateral = J_D_Bl_Na+J_D_Bl_K+J_D_Bl_Cl;
  // enddef;

  def comp Paracellular_voltage as
    var v_ms: volt {pub: out};
    var v_sc: volt {pub: in};
    var v_mc: volt {pub: in};
    // var time: second {pub: in};
    // var capacitance: uF {pub: in};
    // var I_D_P_Na: uA {pub: in};
    // var I_D_P_K: uA {pub: in};
    // var I_D_P_Cl: uA {pub: in};
    v_ms = v_mc-v_sc;
    // ode(v_ms, time) = (I_D_P_Na+I_D_P_K+I_D_P_Cl)/capacitance;
  enddef;

  def comp Paracellular_Diffusion as
    var v_ms: volt {pub: in};
    var Na_m: M {pub: in};
    var K_m: M {pub: in};
    var Cl_m: M {pub: in};
    var Na_s: M {pub: in};
    var K_s: M {pub: in};
    var Cl_s: M {pub: in};
    // var CO2_m: M {pub: in};
    // var CO2_i: M {pub: in};
    var F: C_per_mol {pub: in};
    var z_Na: dimensionless {pub: in};
    var z_k: dimensionless {pub: in};
    var z_Cl: dimensionless {pub: in};
    var R: J_per_K_per_mol {pub: in};
    var A_membrane: m2 {pub: in};
    var T: kelvin {pub: in};
    var P_P_Na: m_per_s {pub: in};
    var P_P_k: m_per_s {pub: in};
    var P_P_Cl: m_per_s {pub: in};
    var J_D_P_Na: umol_per_s {pub: out};
    var I_D_P_Na: uA {pub: out};
    var J_D_P_K: umol_per_s {pub: out};
    var I_D_P_K: uA {pub: out};
    var J_D_P_Cl: umol_per_s {pub: out};
    var I_D_P_Cl: uA {pub: out};
    var J_D_Paracellular: umol_per_s {pub: out};
    var V_P_Na: volt {pub: out};
    var V_P_K: volt {pub: out};
    var V_P_Cl: volt {pub: out};
    var G_P_Na: S_per_m2 {init: 4, pub: out};
    var G_P_K: S_per_m2 {init: 1, pub: out};
    var G_P_Cl: S_per_m2 {init: 4, pub: out};
    // var I_D_P_CO2: uA {pub: out};
    // var J_D_P_CO2: umol_per_s {pub: out};
    // var G_P_CO2: S_per_m2 {init: 7, pub: out};
    // var v_P_CO2: volt {pub: out};
    V_P_Na = R*T/(z_Na*F)*ln(Na_m/Na_s);
    I_D_P_Na = -1e6{dimensionless}*G_P_Na*A_membrane*(v_ms-V_P_Na);
    J_D_P_Na = I_D_P_Na/F;
    V_P_K = R*T/(z_k*F)*ln(K_m/K_s);
    I_D_P_K = -1e6{dimensionless}*G_P_K*A_membrane*(v_ms-V_P_K);
    J_D_P_K = I_D_P_K/F;
    V_P_Cl = R*T/(z_Cl*F)*ln(Cl_m/Cl_s);
    I_D_P_Cl = -1e6{dimensionless}*G_P_Cl*A_membrane*(v_ms-V_P_Cl);
    J_D_P_Cl = I_D_P_Cl/F;
    // v_P_CO2 = R*T/F*ln(CO2_m/CO2_i);
    // I_D_P_CO2 = 1e6{dimensionless}*G_P_CO2*A_membrane*(v_ms-v_P_CO2);
    // J_D_P_CO2 = I_D_P_CO2/F;
    J_D_Paracellular = J_D_P_Na+J_D_P_K+J_D_P_Cl;
  enddef;
  // def comp interstitium_concentration as
  //     var glucose_s: M {init: 0, pub: out};
  // //var J_GLUT: umol_per_s {pub: in};
  // //var J_G_Blood: umol_per_s {pub: in};
  // //var v_cell: m3 {pub: in};
  // //var time: second {pub: in};
  //     //ode(glucose_s, time) = 1e-9{m3_mole_per_litre_per_umol}/v_cell*(-J_GLUT-J_G_Blood);
  // enddef;
  // def comp Blood_concentration as
  //     var glucose_s: M {pub: in};
  //     var glucose_B: M {init: 0.012, pub: out};
  //     var J_G_Blood: umol_per_s {pub: out};
  //     var K: dimensionless {init: 1e-6, pub: out};
  // //var v_cell: m3 {pub: in};
  // var time: second {pub: in};
  //     J_G_Blood = K*(glucose_s-glucose_B);
  //     ode(glucose_B, time) = 0{dimensionless};
  // enddef;
  def map between rate_constants and phenomonological_constants for
    vars ks_12 and ks_12;
    // vars k_12 and k_12;
    vars k_21 and k_21;
    // vars k_23 and k_23;
    vars k_32 and k_32;
    vars k_25 and k_25;
    vars k_52 and k_52;
    vars k_34 and k_34;
    vars k_43 and k_43;
    vars k_45 and k_45;
    vars k_54 and k_54;
    vars k_56 and k_56;
    vars k_65 and k_65;
    vars k_61 and k_61;
    vars k_16 and k_16;
  enddef;
  def map between phenomonological_constants and Apical_concentrations for
    vars Na_m and Na_m;
    vars glucose_m and glucose_m;
  enddef;
  def map between phenomonological_constants and Cell_concentration for
    vars J_Na_SGLT and J_Na_SGLT;
    vars J_Gl_SGLT and J_Gl_SGLT;
  enddef;
  def map between phenomonological_constants and parameters for
    vars k0_23 and k0_23;
    // vars C_T and C_T;
    vars F and F;
  enddef;
  def map between phenomonological_constants and Apical_voltage for
    vars I_Na_SGLT and I_Na_SGLT;
    // vars I_Gl_SGLT and I_Gl_SGLT;
  enddef;
  def map between rate_constants and Apical_concentrations for
    vars Na_m and Na_m;
    vars glucose_m and glucose_m;
  enddef;
  def map between rate_constants and Cell_concentration for
    vars Na_i and Na_i;
    vars glucose_i and glucose_i;
  enddef;
  def map between rate_constants and parameters for
    vars k0_12 and k0_12;
    vars k0_21 and k0_21;
    // vars k0_23 and k0_23;
    vars k0_32 and k0_32;
    vars k0_25 and k0_25;
    vars k0_52 and k0_52;
    vars k0_34 and k0_34;
    vars k0_43 and k0_43;
    vars k0_45 and k0_45;
    vars k0_54 and k0_54;
    vars k0_56 and k0_56;
    vars k0_65 and k0_65;
    vars k0_61 and k0_61;
    vars k0_16 and k0_16;
    vars delta and delta;
    vars alpha_p and alpha_p;
    // vars alpha_pp and alpha_pp;
    // vars C_T and C_T;
    vars n and n;
    vars z_c and z_c;
    vars z_Na and z_Na;
    vars mu and mu;
  enddef;
  def map between CFTR and parameters for
    vars F and F;
    vars z_Cl and z_Cl;
    vars R and R;
    vars T and T;
    vars A_membrane and A_membrane;
  enddef;
  // def map between CFTR_B and parameters for
  //     vars F and F;
  //     vars z_Cl and z_Cl;
  //     vars R and R;
  //     vars T and T;
  //     vars A_membrane and A_membrane;
  // enddef;
  def map between CFTR and Cell_concentration for
    vars Cl_i and Cl_i;
    // vars HCO3_i and HCO3_i;
    // vars HCO3_m and HCO3_m;
    vars J_CFTR and J_CFTR;
    // vars J_CFTR_HCO3 and J_CFTR_HCO3;
  enddef;
  // def map between CFTR_B and Cell_concentration for
  //     vars Cl_i and Cl_i;
  // //        vars HCO3_i and HCO3_i;
  // //        vars HCO3_m and HCO3_m;
  // vars J_CFTR_B and J_CFTR_B;
  //     //        vars J_CFTR_HCO3 and J_CFTR_HCO3;
  // enddef;
  def map between CFTR and Apical_concentrations for
    vars Cl_m and Cl_m;
  enddef;
  // def map between CFTR_B and Blood_concentrations for
  //     vars Cl_s and Cl_s;
  //     vars J_CFTR_B and J_CFTR_B;
  // enddef;
  def map between CFTR and Apical_voltage for
    vars v_mc and v_mc;
    vars I_CFTR and I_CFTR;
    // vars I_CFTR_HCO3 and I_CFTR_HCO3;
  enddef;
  def map between CLC2 and parameters for
    vars F and F;
    vars z_Cl and z_Cl;
    vars R and R;
    vars T and T;
    vars A_membrane and A_membrane;
  enddef;
  def map between CLC2 and Cell_concentration for
    vars Cl_i and Cl_i;
    vars J_CLC2 and J_CLC2;
  enddef;
  def map between CLC2 and Blood_concentrations for
    vars Cl_s and Cl_s;
    vars J_CLC2 and J_CLC2;
  enddef;
  def map between CLC2 and Basol_voltage for
    vars v_sc and v_sc;
    vars I_CLC2 and I_CLC2;
  enddef;
  def map between ENaC and parameters for
    vars F and F;
    vars z_Na and z_Na;
    vars R and R;
    vars T and T;
    vars A_membrane and A_membrane;
  enddef;
  def map between ENaC and Cell_concentration for
    vars Na_i and Na_i;
    vars J_ENaC and J_ENaC;
  enddef;
  def map between ENaC and Apical_concentrations for
    vars Na_m and Na_m;
  enddef;
  def map between ENaC and Apical_voltage for
    vars v_mc and v_mc;
    vars I_ENaC and I_ENaC;
  enddef;
  def map between IK and parameters for
    vars F and F;
    vars z_k and z_k;
    vars R and R;
    vars T and T;
    vars A_membrane and A_membrane;
  enddef;
  def map between IK and Cell_concentration for
    vars K_i and K_i;
    vars Ca_i and Ca_i;
    vars J_IK and J_IK;
  enddef;
  def map between IK and Blood_concentrations for
    vars K_s and K_s;
    vars J_IK and J_IK;
  enddef;
  def map between IK and Basol_voltage for
    vars v_sc and v_sc;
    vars I_IK and I_IK;
  enddef;
  def map between BK and parameters for
    vars F and F;
    vars z_k and z_k;
    vars R and R;
    vars T and T;
    vars A_membrane and A_membrane;
  enddef;
  def map between BK and Cell_concentration for
    vars K_i and K_i;
    vars Ca_i and Ca_i;
    vars J_BK and J_BK;
  enddef;
  def map between BK and Apical_concentrations for
    vars K_m and K_m;
  enddef;
  def map between BK and Apical_voltage for
    vars v_mc and v_mc;
    vars I_BK and I_BK;
  enddef;
  def map between NaKCC and Cell_concentration for
    vars Na_i and Na_i;
    vars Cl_i and Cl_i;
    vars K_i and K_i;
    vars J_NaKCC and J_NaKCC;
  enddef;
  def map between NaKCC and parameters for
    vars F and F;
    vars A_membrane and A_membrane;
  enddef;
  def map between Cell_concentration and GLUT2 for
    vars glucose_i and glucose_i;
    vars J_GLUT and J_GLUT;
    vars v_cell and v_cell;
  enddef;
  def map between Blood_concentrations and GLUT2 for
    vars glucose_s and glucose_s;
    vars J_GLUT and J_GLUT;
  enddef;
  // def map between Blood_concentrations and Cell_concentration for
  //     vars Na_s and Na_s;
  //     vars glucose_s and glucose_s;
  // //vars v_B and v_B;
  // vars J_D_P_Gl and J_D_P_Gl;
  // vars J_w_B and J_w_B;
  // vars J_w_P and J_w_P;
  //     //vars v_w and v_w;
  // enddef;
  // def map between GLUT2 and Basol_voltage for
  //     vars I_GLUT and I_GLUT;
  // enddef;
  // def map between Cell_concentration and Na_Cl for
  //     vars Na_i and Na_i;
  //     vars Cl_i and Cl_i;
  //     vars J_NaCl and J_NaCl;
  // enddef;
  def map between Cell_concentration and NHE3 for
    vars Na_i and Na_i;
    vars H_int and H_int;
    vars H_Ext and H_Ext;
    // vars HCO3_i and HCO3_i;
    // vars HCO3_m and HCO3_m;
    // vars Cl_i and Cl_i;
    vars J_NHE3_Na and J_NHE3_Na;
    vars J_NHE3_H and J_NHE3_H;
    vars v_cell and v_cell;
  enddef;
  def map between parameters and NaK_channel for
    vars F and F;
    // vars time and time;
  enddef;
  def map between Cell_concentration and NaK_channel for
    vars Na_i and Na_i;
    vars J_Na_NaK and J_Na_NaK;
    vars J_K_NaK and J_K_NaK;
  enddef;
  def map between Blood_concentrations and NaK_channel for
    vars J_Na_NaK and J_Na_NaK;
    vars K_s and K_s;
    vars J_K_NaK and J_K_NaK;
  enddef;
  def map between Basol_voltage and NaK_channel for
    vars I_Na_NaK and I_Na_NaK;
    vars I_K_NaK and I_K_NaK;
    vars v_sc and v_sc;
  enddef;
  def map between Cell_concentration and NBC for
    vars Na_i and Na_i;
    vars v_cell and v_cell;
    // vars Cl_i and Cl_i;
    vars J_NBC_Na and J_NBC_Na;
    vars J_NBC_HCO3 and J_NBC_HCO3;
    vars HCO3_i and HCO3_i;
    vars HCO3_s and HCO3_s;
  enddef;
  def map between parameters and NBC for
    vars F and F;
    vars time and time;
    vars R and R;
    vars T and T;
    vars A_membrane and A_membrane;
  enddef;
  def map between Basol_voltage and NBC for
    vars v_sc and v_sc;
    vars I_NBC_HCO3 and I_NBC_HCO3;
    vars I_NBC_Na and I_NBC_Na;
  enddef;
  def map between Blood_concentrations and NBC for
    vars Na_s and Na_s;
    vars J_NBC_Na and J_NBC_Na;
  enddef;
  def map between Blood_concentrations and NaKCC for
    vars J_NaKCC and J_NaKCC;
  enddef;
  // def map between Cell_concentration and NBC for
  //     vars Na_i and Na_i;
  // enddef;
  // def map between Cell_concentration and Apical_Diffusion for
  //     vars Na_i and Na_i;
  //     vars K_i and K_i;
  //     vars Cl_i and Cl_i;
  //     vars J_D_Na and J_D_Na;
  //     vars J_D_K and J_D_K;
  //     vars J_D_Cl and J_D_Cl;
  // enddef;
  def map between Apical_concentrations and Cell_concentration for
    vars Na_m and Na_m;
    vars K_m and K_m;
    vars Cl_m and Cl_m;
    vars glucose_m and glucose_m;
  enddef;
  // def map between Apical_concentrations and Apical_Diffusion for
  //     vars Na_m and Na_m;
  //     vars K_m and K_m;
  //     vars Cl_m and Cl_m;
  //     //vars F and F;
  // enddef;
  // def map between parameters and Apical_Diffusion for
  //     vars F and F;
  //     vars z_Na and z_Na;
  //     vars z_k and z_k;
  //     vars z_Cl and z_Cl;
  //     vars R and R;
  //     vars T and T;
  //     vars A_membrane and A_membrane;
  //     vars P_Na and P_Na;
  //     vars P_k and P_k;
  //     vars P_Cl and P_Cl;
  // enddef;
  // def map between parameters and Cell_concentration for
  //     vars A_membrane and A_membrane;
  // enddef;
  // def map between parameters and Apical_voltage for
  //     vars time and time;
  // enddef;
  // def map between Apical_Diffusion and Apical_voltage for
  //     vars I_D_Na and I_D_Na;
  //     vars I_D_K and I_D_K;
  //     vars I_D_Cl and I_D_Cl;
  //     vars v_mc and v_mc;
  // enddef;
  def map between parameters and Apical_voltage for
    vars capacitance and capacitance;
    vars time and time;
    vars v_mc and v_mc;
  enddef;
  // def map between Cell_concentration and Basolateral_Diffusion for
  //     vars Na_i and Na_i;
  //     vars K_i and K_i;
  //     vars Cl_i and Cl_i;
  //     vars J_D_Bl_Na and J_D_Bl_Na;
  //     vars J_D_Bl_K and J_D_Bl_K;
  //     vars J_D_Bl_Cl and J_D_Bl_Cl;
  // enddef;
  def map between Blood_concentrations and Cell_concentration for
    vars Na_s and Na_s;
    vars K_s and K_s;
    vars Cl_s and Cl_s;
    vars glucose_s and glucose_s;
    vars J_D_P_Gl and J_D_P_Gl;
    vars J_w_B and J_w_B;
    vars J_w_P and J_w_P;
  enddef;
  // def map between Blood_concentrations and Basolateral_Diffusion for
  //     vars Na_s and Na_s;
  //     vars K_s and K_s;
  //     vars Cl_s and Cl_s;
  // //        vars J_D_Bl_Na and J_D_Bl_Na;
  // //        vars J_D_Bl_K and J_D_Bl_K;
  // //        vars J_D_Bl_Cl and J_D_Bl_Cl;
  //     //vars F and F;
  // enddef;
  // def map between parameters and Basolateral_Diffusion for
  //     vars F and F;
  //     vars z_Na and z_Na;
  //     vars z_k and z_k;
  //     vars z_Cl and z_Cl;
  //     vars R and R;
  //     vars T and T;
  //     vars A_Basol and A_Basol;
  //     vars P_Bl_Na and P_Bl_Na;
  //     vars P_Bl_k and P_Bl_k;
  //     vars P_Bl_Cl and P_Bl_Cl;
  // enddef;
  def map between parameters and Cell_concentration for
    vars v_cell and v_cell;
    vars time and time;
    vars A_membrane and A_membrane;
  enddef;
  def map between parameters and NHE3 for
    vars F and F;
    vars A_membrane and A_membrane;
    // vars time and time;
    // vars R and R;
    // vars T and T;
  enddef;
  def map between Apical_voltage and NHE3 for
    // vars v_sc and v_sc;
    vars I_NHE3_H and I_NHE3_H;
    vars I_NHE3_Na and I_NHE3_Na;
  enddef;
  def map between Apical_concentrations and NHE3 for
    vars Na_m and Na_m;
  enddef;
  // def map between AE1 and NBC for
  //     vars HCO3_s and HCO3_s;
  //     vars HCO3_i and HCO3_i;
  // enddef;
  def map between parameters and AE1 for
    vars F and F;
    vars A_membrane and A_membrane;
    // vars A_membrane and A_membrane;
  enddef;
  def map between Cell_concentration and AE1 for
    vars Cl_i and Cl_i;
    vars HCO3_i and HCO3_i;
    vars HCO3_m and HCO3_m;
    vars J_AE1_Cl and J_AE1_Cl;
    vars J_AE1_HCO3 and J_AE1_HCO3;
    vars v_cell and v_cell;
  enddef;
  def map between Apical_concentrations and AE1 for
    vars Cl_m and Cl_m;
  enddef;
  // def map between Apical_voltage and AE1 for
  //     //vars v_sc and v_sc;
  //     vars I_AE1_Cl and I_AE1_Cl;
  //     vars I_AE1_HCO3 and I_AE1_HCO3;
  // enddef;
  // def map between Basolateral_concentrations and Basol_voltage for
  //     vars time and time;
  // enddef;
  // def map between Basolateral_Diffusion and Basol_voltage for
  //     vars I_D_Bl_Na and I_D_Bl_Na;
  //     vars I_D_Bl_K and I_D_Bl_K;
  //     vars I_D_Bl_Cl and I_D_Bl_Cl;
  //     vars v_sc and v_sc;
  // enddef;
  def map between parameters and Basol_voltage for
    vars capacitance and capacitance;
    vars time and time;
  enddef;
  def map between Apical_concentrations and Paracellular_Diffusion for
    vars Na_m and Na_m;
    vars K_m and K_m;
    vars Cl_m and Cl_m;
    // vars F and F;
  enddef;
  def map between Apical_concentrations and parameters for
    vars time and time;
    // vars F and F;
  enddef;
  def map between parameters and Paracellular_Diffusion for
    vars F and F;
    vars z_Na and z_Na;
    vars z_k and z_k;
    vars z_Cl and z_Cl;
    vars R and R;
    vars T and T;
    vars A_membrane and A_membrane;
    vars P_P_Na and P_P_Na;
    vars P_P_k and P_P_k;
    vars P_P_Cl and P_P_Cl;
  enddef;
  def map between Cell_concentration and Paracellular_Diffusion for
    vars J_D_P_Na and J_D_P_Na;
  enddef;
  // def map between Apical_concentrations and Paracellular_voltage for
  //     vars time and time;
  // enddef;
  def map between Paracellular_Diffusion and Paracellular_voltage for
    // vars I_D_P_Na and I_D_P_Na;
    // vars I_D_P_K and I_D_P_K;
    // vars I_D_P_Cl and I_D_P_Cl;
    vars v_ms and v_ms;
  enddef;
  // def map between parameters and Paracellular_voltage for
  //     vars capacitance and capacitance;
  //     vars time and time;
  // enddef;
  def map between Basol_voltage and Paracellular_voltage for
    vars v_sc and v_sc;
  enddef;
  def map between Apical_voltage and Paracellular_voltage for
    vars v_mc and v_mc;
  enddef;
  def map between Apical_voltage and Paracellular_Diffusion for
    vars I_D_P_Na and I_D_P_Na;
    vars I_D_P_K and I_D_P_K;
    vars I_D_P_Cl and I_D_P_Cl;
  enddef;
  def map between Basol_voltage and Paracellular_Diffusion for
    vars I_D_P_Na and I_D_P_Na;
    vars I_D_P_K and I_D_P_K;
    vars I_D_P_Cl and I_D_P_Cl;
  enddef;
  def map between Blood_concentrations and Paracellular_Diffusion for
    vars Na_s and Na_s;
    vars K_s and K_s;
    vars Cl_s and Cl_s;
    vars J_D_P_Na and J_D_P_Na;
    vars J_D_P_K and J_D_P_K;
    vars J_D_P_Cl and J_D_P_Cl;
    // vars F and F;
  enddef;
  def map between parameters and Blood_concentrations for
    vars time and time;
  enddef;
  def map between Cell_concentration and A_GLUT2 for
    vars glucose_i and glucose_i;
    vars J_A_GLUT and J_A_GLUT;
    vars v_cell and v_cell;
  enddef;
  def map between Apical_concentrations and A_GLUT2 for
    vars glucose_m and glucose_m;
    // vars J_GLUT and J_GLUT;
  enddef;
  // def map between Cell_concentration and Hydration for
  //     vars H_int and H_int;
  //     vars HCO3_i and HCO3_i;
  //     vars J_buf_C and J_buf_C;
  //     vars H_Ext and H_Ext;
  //     vars HCO3_m and HCO3_m;
  //     vars J_buf_A and J_buf_A;
  // enddef;
  // def map between parameters and Hydration for
  //     vars time and time;
  //     vars v_cell and v_cell;
  // enddef;
  // def map between Paracellular_Diffusion and Hydration for
  //     vars CO2_i and CO2_i;
  //     vars CO2_m and CO2_m;
  //     vars J_D_P_CO2 and J_D_P_CO2;
  // enddef;
enddef;
