//  FILE : dokos_model_II_1996.xml
//
// CREATED : 15th April 2003
//
// LAST MODIFIED : 20th April 2005
//
// AUTHOR : Catherine Lloyd
//          Department of Engineering Science
//          The University of Auckland
//
// MODEL STATUS : This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/01/2002 CellML Metadata 1.0 Specification.
//
// DESCRIPTION : This file contains a CellML description of Dokos et al's 1996 mathematical model of the ion currents underlying the vagal inhibition of cardiac sinoatrial node pacemaker activity.
//
// CHANGES:
//   04/06/2003 - CML - Fixed MathML in a couple of components.
//   11/08/2003 - CML - Added equations.
//   20/04/2005 - PJV - Made MathML id's unique
// publisher: The University of Auckland, Bioengineering Institute
// created: W3CDTF 2003-04-15T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit The Bioengineering Institute; c.lloyd@auckland.ac.nz; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2005-04-20; Made MathML id's unique; Given Peter; Family Villiger; Other J
// modification: W3CDTF 2003-06-04; Corrected equations: i_CaL_calculation in L_type_calcium_current and i_CaT_calculation in T_type_calcium_current.; Given Catherine; Family Lloyd; Other May
// modification: W3CDTF 2002-07-18; Added equations for k14, k41, di, k34, k21, k23, k32, and do in the sodium-calcium exchange current component.; Given Catherine; Family Lloyd; Other May
// title: Dokos et al's 1996 mathematical model of the ion currents underlying the vagal inhibition of cardiac sinoatrial node pacemaker activity.
// bio_entity: Sinoatrial Node Cell
// comment: FN Catherine Lloyd; This is the CellML description of Dokos et al's 1996 mathematical model of the ion currents underlying the vagal inhibition of cardiac sinoatrial node pacemaker activity.
// reference: subject_type keyword; Sinoatrial Node; cardiac; electrophysiology
// reference: Pubmed_id 8917735; Given Socrates; Family Dokos; Given Branko; Family Celler; Given Nigel; Family Lovell; title Vagal Control of Sinoatrial Rhythm: a Mathematical Model; volume 182; first_page 21; title Journal of Theoretical Biology; W3CDTF 1996-09-07; last_page 44
// species: Mammalia
def model dokos_celler_lovell_1996_version02 as
  // A Model of Sinoatrial Node Vagal Control
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This model is valid CellML. It has been unit checked and curated and is known to reproduce the published results in COR and OpenCell.
  //
  // Model Structure
  //
  // Sinoatrial (SA) node cells have an inherent ability to generate a depolarising, unstable resting potential leading to automaticity. The rhythmic, electrical activity of the sinoatrial cells set the rate at which the entire heart beats, hence the sinoatrial node myocytes are referred to as the pacemaker cells. This cardiac pacemaker activity is under vagal control. The ionic mechanisms underlying the vagal inhibition of the cardiac pacemaker are the subject of investigation in a mathematical model published by Socrates Dokos, Branko Celler and Nigel Lovell (1996).
  //
  // In this paper, the authors review the existing knowledge surrounding the vagal control of sinoatrial rhythm. It is known that following vagal stimulation, acetylcholine (ACh) is released into the parasympathetic neuroeffector junction, and then binds to muscarinic receptors on the plasma membrane of the SA node cells. This receptor-binding triggers membrane hyperpolarisation, and/or decreases the rate of pacemaker depolarisation, in turn prolonging the spontaneous cycle duration, and decreasing the rate of autorhythmic firing. The principal mechanism underlying this ACh-mediated inhibition of the cardiac pacemaker is an increase in the membrane permeability to K+. However, it has been suggested that the influence of ACh on other ion currents may also have a significant effect on pacemaker activity.
  //
  // The focus of the Dokos et al. 1996 model was to gain a better understanding of the mechanisms underlying vagal control of the cardiac pacemaker. Their model was based on a wide range of electrophysiological data, and their aim was to reproduce these experimental results with their mathematical model. This model is an extension of their previously published mathematical model of the SA node. In this new model, the background potassium current ib,K has been replaced by an ACh-activated potassium current iK,ACh . In addition, the new model incorporates the influence of ACh on the other ionic currents, such as the inhibition of the hyperpolarisation-activated current if , and the inhibition of the L-type calcium current iCa,L .
  //
  // Vagal control of pacemaker activity is modelled using a three compartment model describing ACh release and uptake in the neuroeffector junction (see below). Upon vagal stimulus, ACh is released into the neuroeffector junction, activating iK,ACh and inhibiting if and iCa,L .
  //
  // The complete original paper reference is cited below:
  //
  // Vagal Control of Sinoatrial Rhythm: a Mathematical Model, Socrates Dokos, Branko Celler, and Nigel Lovell, 1996, Journal of Theoretical Biology , 182, 21-44. PubMed ID: 8917735 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=8917735&dopt=Abstract)
  //
  // cell diagram
  //
  // A schematic diagram of the Dokos et al. 1996 mathematical model of vagal control of cardiac pacemaker activity.
  // Below, are defined some additional units for association with variables and
  // constants within the model.
  def unit flux as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit second {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit second {expo: -1};
    unit millimolar {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit picoA_per_millimolar as
    unit ampere {pref: pico};
    unit millimolar {expo: -1.59};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_millimole as
    unit coulomb {expo: -1};
    unit mole {pref: milli};
  enddef;
  def unit picolitre as
    unit litre {pref: pico};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp constants as
    var R: joule_per_mole_kelvin {pub: out, init: 8.32};
    var T: kelvin {pub: out, init: 310.0};
    var F: coulomb_per_millimole {pub: out, init: 96.49};
  enddef;

  def comp membrane as
    var E: millivolt {pub: out, init: -64.9};
    var C: picoF {init: 32.0};
    var i_tot: picoA;
    var time: second {pub: in};
    var i_CaL: picoA {pub: in};
    var i_CaT: picoA {pub: in};
    var i_Na: picoA {pub: in};
    var i_K: picoA {pub: in};
    var i_f: picoA {pub: in};
    var i_p: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_bNa: picoA {pub: in};
    var i_KACh: picoA {pub: in};
    ode(E, time) = -i_tot/C;
    i_tot = i_CaL+i_CaT+i_Na+i_K+i_f+i_p+i_NaCa+i_bNa+i_KACh;
  enddef;

  def comp reversal_potentials as
    var E_Ca: millivolt {pub: out};
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cai: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    E_Ca = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
    E_Na = R*T/F*ln(Nao/Nai);
    E_K = R*T/F*ln(Ko/Ki);
  enddef;

  def comp L_type_calcium_current as
    var i_CaL: picoA {pub: out};
    var g_CaL: nanoS {init: 400.0};
    var E_Ca: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    var E: millivolt {pub: in, priv: out};
    var Cai: millimolar {pub: in, priv: out};
    var ACh: millimolar {pub: in, priv: out};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    var w: dimensionless {priv: in};
    i_CaL = w*g_CaL*d*f*f2*(E+(-E_Ca)+75.0{millivolt});
  enddef;

  def comp L_type_calcium_current_d_gate as
    var d: dimensionless {pub: out, init: 0.0001};
    var d_infinity: dimensionless;
    var tau_d: second {init: 0.002};
    var E: millivolt {pub: in};
    var time: second {pub: in};
    d_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((E+6.6{millivolt})/(-6.6{millivolt})));
    ode(d, time) = (d_infinity-d)/tau_d;
  enddef;

  def comp L_type_calcium_current_f_gate as
    var f: dimensionless {pub: out, init: 0.1505};
    var f_infinity: dimensionless;
    var tau_f: second;
    var E: millivolt {pub: in};
    var time: second {pub: in};
    f_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((E+25.0{millivolt})/6.0{millivolt}));
    tau_f = 0.031{second}+1.0{second}/(1.0{dimensionless}+exp((E+37.6{millivolt})/8.1{millivolt}));
    ode(f, time) = (f_infinity-f)/tau_f;
  enddef;

  def comp L_type_calcium_current_f2_gate as
    var f2: dimensionless {pub: out, init: 0.2190};
    var alpha_f2: first_order_rate_constant {init: 3.0};
    var beta_f2: second_order_rate_constant {init: 40000.0};
    var E: millivolt {pub: in};
    var Cai: millimolar {pub: in};
    var time: second {pub: in};
    ode(f2, time) = alpha_f2*(1.0{dimensionless}-f2)-beta_f2*Cai*f2;
  enddef;

  def comp L_type_calcium_current_w_gate as
    var w: dimensionless {pub: out};
    var alpha_w: first_order_rate_constant;
    var beta_w: first_order_rate_constant;
    var ACh: millimolar {pub: in};
    var time: second {pub: in};
    alpha_w = (0.0033{first_order_rate_constant}*ACh+0.0000006{dimensionless})/(ACh+0.000036{dimensionless});
    beta_w = 0.0037{first_order_rate_constant}*ACh/(ACh+0.000036{dimensionless});
    ode(w, time) = alpha_w*(1.0{dimensionless}-w)-beta_w*w;
  enddef;

  def comp T_type_calcium_current as
    var i_CaT: picoA {pub: out};
    var g_CaT: nanoS {init: 85.0};
    var E_Ca: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    var E: millivolt {pub: in, priv: out};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    i_CaT = g_CaT*d*f*(E+(-E_Ca)+75.0{millivolt});
  enddef;

  def comp T_type_calcium_current_d_gate as
    var d: dimensionless {pub: out, init: 0.0010};
    var d_infinity: dimensionless;
    var tau_d: second;
    var E: millivolt {pub: in};
    var time: second {pub: in};
    d_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((E+23.0{millivolt})/(-6.1{millivolt})));
    tau_d = 0.0006{second}+0.0054{second}/(1.0{dimensionless}+exp(0.03{dimensionless}*(E+100.0{millivolt})));
    ode(d, time) = (d_infinity-d)/tau_d;
  enddef;

  def comp T_type_calcium_current_f_gate as
    var f: dimensionless {pub: out, init: 0.1328};
    var f_infinity: dimensionless;
    var tau_f: second;
    var E: millivolt {pub: in};
    var time: second {pub: in};
    f_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((E+75.0{millivolt})/6.6{millivolt}));
    tau_f = 0.001{second}+0.04{second}/(1.0{dimensionless}+exp(0.08{dimensionless}*(E+65.0{millivolt})));
    ode(f, time) = (f_infinity-f)/tau_f;
  enddef;

  def comp fast_sodium_current as
    var i_Na: picoA {pub: out};
    var g_Na: nanoS {init: 250.0};
    var E_Na: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    var E: millivolt {pub: in, priv: out};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*(E-E_Na);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {pub: out, init: 0.0139};
    var alpha_m: first_order_rate_constant;
    var beta_m: first_order_rate_constant;
    var E: millivolt {pub: in};
    var time: second {pub: in};
    alpha_m = 200.0{per_millivolt_second}*(E+34.3{millivolt})/(1.0{dimensionless}-exp(-0.09{dimensionless}*(E+34.3{millivolt})));
    beta_m = 8000.0{first_order_rate_constant}*exp(-0.15{dimensionless}*(E+56.2{millivolt}));
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {pub: out, init: 0.0087};
    var alpha_h: first_order_rate_constant;
    var beta_h: first_order_rate_constant;
    var E: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 32.4{first_order_rate_constant}*exp(-0.14{dimensionless}*(E+93.4{millivolt}));
    beta_h = 709.0{first_order_rate_constant}/(1.0{dimensionless}+4.2{dimensionless}*exp(-0.06{dimensionless}*(E+45.4{millivolt})));
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  def comp delayed_rectifying_potassium_current as
    var i_K: picoA {pub: out};
    var i_KK: picoA {pub: out};
    var i_KNa: picoA {pub: out};
    var Kk: picoA_per_millimolar {init: 0.26};
    var P_KNa: dimensionless {init: 0.035};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var time: second {pub: in, priv: out};
    var E: millivolt {pub: in, priv: out};
    var x: dimensionless {priv: in};
    i_K = i_KK+i_KNa;
    i_KK = x*Kk*pow(Ko, 0.59{dimensionless})*(Ki-Ko*exp(-E*F/(R*T)));
    i_KNa = x*Kk*P_KNa*pow(Ko, 0.59{dimensionless})*(Nai-Nao*exp(-E*F/(R*T)));
  enddef;

  def comp delayed_rectifying_potassium_current_x_gate as
    var x: dimensionless {pub: out, init: 0.5682};
    var x_infinity: dimensionless;
    var tau_x: second;
    var E: millivolt {pub: in};
    var time: second {pub: in};
    x_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((E+25.1{millivolt})/(-7.4{millivolt})));
    tau_x = 1.0{second}/(17.0{dimensionless}*exp(0.0398{dimensionless}*E)+0.211{dimensionless}*exp(-0.051{dimensionless}*E));
    ode(x, time) = (x_infinity-x)/tau_x;
  enddef;

  def comp hyperpolarising_activated_current as
    var i_f: picoA {pub: out};
    var i_fNa: picoA {pub: out};
    var i_fK: picoA {pub: out};
    var Kmf: millimolar {init: 10.3};
    var g_fNa: nanoS {init: 8.1};
    var g_fK: nanoS {init: 13.5};
    var E_Na: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var time: second {pub: in, priv: out};
    var E: millivolt {pub: in, priv: out};
    var ACh: millimolar {pub: in, priv: out};
    var y: dimensionless {priv: in};
    i_f = i_fK+i_fNa;
    i_fNa = y*(pow(Ko, 1.83{dimensionless})/(pow(Ko, 1.83{dimensionless})+pow(Kmf, 1.83{dimensionless})))*(g_fNa*(Ko*(E-E_Na)));
    i_fK = y*(pow(Ko, 1.83{dimensionless})/(pow(Ko, 1.83{dimensionless})+pow(Kmf, 1.83{dimensionless})))*(g_fK*(Ko*(E-E_K)));
  enddef;

  def comp hyperpolarising_activated_current_y_gate as
    var y: dimensionless {pub: out, init: 0.0287};
    var alpha_y: first_order_rate_constant;
    var beta_y: first_order_rate_constant;
    var v: dimensionless;
    var alpha_v: first_order_rate_constant;
    var beta_v: first_order_rate_constant;
    var E_shift_max: millivolt {init: 10.0};
    var ACh: millimolar {pub: in};
    var E: millivolt {pub: in};
    var time: second {pub: in};
    alpha_v = 4.0{first_order_rate_constant}*ACh/(ACh+0.00008{millimolar});
    beta_v = 0.00001{flux}/(ACh+0.00008{millimolar});
    ode(v, time) = alpha_v*(1.0{dimensionless}-v)-beta_v*v;
    alpha_y = 0.36{per_millivolt_second}*(E+137.8{millivolt}+pow(v, 4.0{dimensionless})*E_shift_max)/(exp(0.0666{dimensionless}*(E+137.8{millivolt}+pow(v, 4.0{dimensionless})*E_shift_max))-1.0{dimensionless});
    beta_y = 0.1{per_millivolt_second}*(E+76.3{millivolt}+pow(v, 4.0{dimensionless})*E_shift_max)/(1.0{dimensionless}-exp(-0.21{dimensionless}*(E+76.3{millivolt}+pow(v, 4.0{dimensionless})*E_shift_max)));
    ode(y, time) = alpha_y*(1.0{dimensionless}-y)-beta_y*y;
  enddef;

  def comp sodium_potassium_pump as
    var i_p: picoA {pub: out};
    var KmNa: millimolar {init: 40.0};
    var KmK: millimolar {init: 1.0};
    var i_pmax: picoA {init: 226.0};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var time: second {pub: in};
    var E: millivolt {pub: in};
    i_p = i_pmax*(Nai/(Nai+KmNa))*(Ko/(Ko+KmK))*(1.0{dimensionless}-sqr((E-40.0{millivolt})/211.0{millivolt}));
  enddef;

  def comp sodium_calcium_exchange_current as
    var i_NaCa: picoA {pub: out};
    var kNaCa: picoA {init: 4000.0};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var k41: dimensionless;
    var k34: dimensionless;
    var k23: dimensionless;
    var k21: dimensionless;
    var k32: dimensionless;
    var k43: dimensionless;
    var k12: dimensionless;
    var k14: dimensionless;
    var Qci: dimensionless {init: 0.1369};
    var Qn: dimensionless {init: 0.4315};
    var Qco: dimensionless {init: 0.0};
    var K3ni: millimolar {init: 26.44};
    var Kci: millimolar {init: 0.0207};
    var K1ni: millimolar {init: 395.3};
    var K2ni: millimolar {init: 2.289};
    var Kcni: millimolar {init: 26.44};
    var K3no: millimolar {init: 4.663};
    var K1no: millimolar {init: 1628.0};
    var K2no: millimolar {init: 561.4};
    var Kco: millimolar {init: 3.663};
    var do: dimensionless;
    var di: dimensionless;
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var time: second {pub: in};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var E: millivolt {pub: in};
    i_NaCa = kNaCa*((x2*k21-x1*k12)/(x1+x2+x3+x4));
    x1 = k41*k34*(k23+k21)+k21*k32*(k43+k41);
    x2 = k32*k43*(k14+k12)+k41*k12*(k34+k32);
    x3 = k14*k43*(k23+k21)+k12*k23*(k43+k41);
    x4 = k23*k34*(k14+k12)+k14*k21*(k34+k32);
    k43 = Nai/(K3ni+Nai);
    k12 = Cai/Kci*exp(-Qci*E*F/(R*T))/di;
    k14 = (sqr(Nai)/(K1ni*K2ni)+pow(Nai, 3.0{dimensionless})/(K1ni*K2ni*K3ni))*exp(Qn*E*F/(R*T))/di;
    k41 = exp(-(Qn*E*F)/(2.0{dimensionless}*R*T));
    di = 1.0{dimensionless}+Cai/Kci+Cai/Kci*exp(-(Qci*E*F)/(R*T))+Cai*Nai/(Kci*Kcni)+Nai/K1ni+sqr(Nai)/(K1ni*K2ni)+pow(Nai, 3.0{dimensionless})/(K1ni*K2ni*K3ni);
    k34 = Nao/(K3no+Nao);
    k21 = Cao/Kco*exp(Qco*E*F/(R*T))/do;
    k23 = sqr(Nao)/(K1no*K2no)*(pow(Nao, 3.0{dimensionless})/(K1no*K2no*K3no))*exp(-(Qn*E*F)/(2.0{dimensionless}*R*T))/do;
    k32 = exp(Qn*E*F/(2.0{dimensionless}*R*T));
    do = 1.0{dimensionless}+Cao/Kco+Cao/Kco*exp(-(Qco*E*F)/(R*T))+Nao/K1no+sqr(Nao)/(K1no*K2no)+pow(Nao, 3.0{dimensionless})/(K1no*K2no*K3no);
  enddef;

  def comp background_sodium_current as
    var i_bNa: picoA {pub: out};
    var g_Nab: nanoS {init: 0.24};
    var time: second {pub: in};
    var E: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    i_bNa = g_Nab*(E-E_Na);
  enddef;

  def comp ACh_activated_potassium_current as
    var i_KACh: picoA {pub: out};
    var KbK: picoA_per_millimolar {init: 0.07};
    var KKACh: picoA_per_millimolar {init: 2.0};
    var R: joule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var E: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    var ACh: millimolar {pub: in, priv: out};
    var u: dimensionless {priv: in};
    i_KACh = (KbK+pow(u, 4.0{dimensionless})*KKACh)*pow(Ko, 0.41{dimensionless})*(Ki-Ko*exp(-E*F/(R*T)));
  enddef;

  def comp ACh_activated_potassium_current_u_gate as
    var u: dimensionless {pub: out};
    var alpha_u: first_order_rate_constant;
    var beta_u: first_order_rate_constant;
    var ACh: millimolar {pub: in};
    var time: second {pub: in};
    alpha_u = 4.7{first_order_rate_constant}*ACh/(ACh+0.00012{millimolar});
    beta_u = 0.00027{flux}/(ACh+0.00012{millimolar});
    ode(u, time) = alpha_u*(1.0{dimensionless}-u)-beta_u*u;
  enddef;

  def comp ACh_kinetics_in_neuroeffector_junction as
    var ACh: millimolar {pub: out};
    var ACh_ms: millimolar;
    var ACh_ex: millimolar;
    var k1: dimensionless {init: 0.01};
    var k2: dimensionless {init: 0.0005};
    var F_ms: dimensionless {init: 1.0};
    var F_ex: dimensionless {init: 1.0};
    var k_D: first_order_rate_constant {init: 0.5};
    var k_E: first_order_rate_constant {init: 0.5};
    var k_H: first_order_rate_constant {init: 14.0};
    var time: second {pub: in};
    ode(ACh_ms, time) = k_H/F_ms*ACh+k_E/F_ms*ACh_ex;
    ode(ACh, time) = -k_H*ACh-k_D*(ACh-ACh_ex);
    ode(ACh_ex, time) = -(k_E/F_ex)*ACh-k_D/F_ms*(ACh_ex-ACh);
  enddef;

  def comp sarcoplasmic_reticulum_kinetics as
    var i_up: picoA {pub: out};
    var i_tr: picoA {pub: out};
    var i_rel: picoA {pub: out};
    var V_rel: picolitre {pub: out, init: 0.015};
    var V_up: picolitre {pub: out, init: 0.035};
    var i_up_max: picoA {init: 21.2};
    var alpha_rel: first_order_rate_constant;
    var alpha_tr: first_order_rate_constant;
    var KmCaup: millimolar {init: 0.0005};
    var KmCarel: millimolar {init: 0.001};
    var tau_rel: second {init: 0.005};
    var tau_tr: second {init: 0.4};
    var time: second {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var Cai: millimolar {pub: in};
    var Caup: millimolar {pub: in};
    var Carel: millimolar {pub: in};
    i_up = i_up_max*(sqr(Cai)/(sqr(Cai)+sqr(KmCaup)));
    i_tr = alpha_tr*Caup;
    i_rel = alpha_rel*Carel*(sqr(Cai)/(sqr(Cai)+sqr(KmCarel)));
    alpha_rel = 2.0{dimensionless}*V_rel*F/tau_rel;
    alpha_tr = 2.0{dimensionless}*V_rel*F/tau_rel;
  enddef;

  def comp ion_concentrations as
    var Cai: millimolar {pub: out, init: 0.000034};
    var Cao: millimolar {pub: out, init: 2.0004};
    var Caup: millimolar {pub: out, init: 0.5832};
    var Carel: millimolar {pub: out, init: 0.1101};
    var Nai: millimolar {pub: out, init: 7.4994};
    var Nao: millimolar {pub: out, init: 139.9929};
    var Ki: millimolar {pub: out, init: 140.0073};
    var Ko: millimolar {pub: out, init: 5.4243};
    var V_i: picolitre {init: 2.5};
    var V_e: picolitre {init: 0.5};
    var tau_b: second {init: 0.1};
    var Nab: millimolar {init: 140.0};
    var Cab: millimolar {init: 2.0};
    var Kb: millimolar {init: 5.4};
    var time: second {pub: in};
    var F: coulomb_per_millimole {pub: in};
    var i_bNa: picoA {pub: in};
    var i_fNa: picoA {pub: in};
    var i_Na: picoA {pub: in};
    var i_p: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_KNa: picoA {pub: in};
    var i_KK: picoA {pub: in};
    var i_fK: picoA {pub: in};
    var i_KACh: picoA {pub: in};
    var i_CaL: picoA {pub: in};
    var i_CaT: picoA {pub: in};
    var i_up: picoA {pub: in};
    var i_rel: picoA {pub: in};
    var i_tr: picoA {pub: in};
    var V_rel: picolitre {pub: in};
    var V_up: picolitre {pub: in};
    ode(Nai, time) = -(i_bNa+i_fNa+i_Na+3.0{dimensionless}*i_p+3.0{dimensionless}*i_NaCa+i_KNa)/(F*V_i);
    ode(Nao, time) = (i_bNa+i_fNa+i_Na+3.0{dimensionless}*i_p+3.0{dimensionless}*i_NaCa+i_KNa)/(F*V_e)+(Nab-Nao)/tau_b;
    ode(Ki, time) = -(i_KK+i_fK+(-2.0{dimensionless}*i_p)+i_KACh)/(F*V_i);
    ode(Ko, time) = (i_KK+i_fK+(-2.0{dimensionless}*i_p)+i_KACh)/(F*V_e)+(Kb-Ko)/tau_b;
    ode(Cai, time) = -(i_CaL+i_CaT+(-2.0{dimensionless}*i_NaCa)+i_up+(-i_rel))/(2.0{dimensionless}*F*V_i);
    ode(Cao, time) = (i_CaL+i_CaT+(-2.0{dimensionless}*i_NaCa))/(2.0{dimensionless}*F*V_e)+(Cab-Cao)/tau_b;
    ode(Caup, time) = (i_up-i_tr)/(2.0{dimensionless}*V_up*F);
    ode(Carel, time) = (i_tr-i_rel)/(2.0{dimensionless}*V_rel*F);
  enddef;

  def group as containment for
    comp membrane incl
      comp L_type_calcium_current incl
        comp L_type_calcium_current_d_gate;
        comp L_type_calcium_current_f_gate;
        comp L_type_calcium_current_f2_gate;
        comp L_type_calcium_current_w_gate;
      endcomp;
      comp T_type_calcium_current incl
        comp T_type_calcium_current_d_gate;
        comp T_type_calcium_current_f_gate;
      endcomp;
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp delayed_rectifying_potassium_current incl
        comp delayed_rectifying_potassium_current_x_gate;
      endcomp;
      comp hyperpolarising_activated_current incl
        comp hyperpolarising_activated_current_y_gate;
      endcomp;
      comp sodium_potassium_pump;
      comp sodium_calcium_exchange_current;
      comp background_sodium_current;
      comp ACh_activated_potassium_current incl
        comp ACh_activated_potassium_current_u_gate;
      endcomp;
      comp ACh_kinetics_in_neuroeffector_junction;
      comp sarcoplasmic_reticulum_kinetics;
      comp ion_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp L_type_calcium_current incl
      comp L_type_calcium_current_d_gate;
      comp L_type_calcium_current_f_gate;
      comp L_type_calcium_current_f2_gate;
      comp L_type_calcium_current_w_gate;
    endcomp;
    comp T_type_calcium_current incl
      comp T_type_calcium_current_d_gate;
      comp T_type_calcium_current_f_gate;
    endcomp;
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp delayed_rectifying_potassium_current incl
      comp delayed_rectifying_potassium_current_x_gate;
    endcomp;
    comp hyperpolarising_activated_current incl
      comp hyperpolarising_activated_current_y_gate;
    endcomp;
    comp ACh_activated_potassium_current incl
      comp ACh_activated_potassium_current_u_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between L_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between T_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifying_potassium_current and environment for
    vars time and time;
  enddef;
  def map between hyperpolarising_activated_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_exchange_current and environment for
    vars time and time;
  enddef;
  def map between background_sodium_current and environment for
    vars time and time;
  enddef;
  def map between ACh_activated_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sarcoplasmic_reticulum_kinetics and environment for
    vars time and time;
  enddef;
  def map between ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and constants for
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between delayed_rectifying_potassium_current and constants for
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between sodium_calcium_exchange_current and constants for
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between ACh_activated_potassium_current and constants for
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between sarcoplasmic_reticulum_kinetics and constants for
    vars F and F;
  enddef;
  def map between ion_concentrations and constants for
    vars F and F;
  enddef;
  def map between L_type_calcium_current and membrane for
    vars E and E;
    vars i_CaL and i_CaL;
  enddef;
  def map between T_type_calcium_current and membrane for
    vars E and E;
    vars i_CaT and i_CaT;
  enddef;
  def map between fast_sodium_current and membrane for
    vars E and E;
    vars i_Na and i_Na;
  enddef;
  def map between delayed_rectifying_potassium_current and membrane for
    vars E and E;
    vars i_K and i_K;
  enddef;
  def map between hyperpolarising_activated_current and membrane for
    vars E and E;
    vars i_f and i_f;
  enddef;
  def map between sodium_potassium_pump and membrane for
    vars E and E;
    vars i_p and i_p;
  enddef;
  def map between sodium_calcium_exchange_current and membrane for
    vars E and E;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between background_sodium_current and membrane for
    vars E and E;
    vars i_bNa and i_bNa;
  enddef;
  def map between ACh_activated_potassium_current and membrane for
    vars E and E;
    vars i_KACh and i_KACh;
  enddef;
  def map between reversal_potentials and ion_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ki and Ki;
    vars Ko and Ko;
  enddef;
  def map between L_type_calcium_current and reversal_potentials for
    vars E_Ca and E_Ca;
  enddef;
  def map between T_type_calcium_current and reversal_potentials for
    vars E_Ca and E_Ca;
  enddef;
  def map between fast_sodium_current and reversal_potentials for
    vars E_Na and E_Na;
  enddef;
  def map between hyperpolarising_activated_current and reversal_potentials for
    vars E_Na and E_Na;
    vars E_K and E_K;
  enddef;
  def map between background_sodium_current and reversal_potentials for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_calcium_current and ion_concentrations for
    vars Cai and Cai;
    vars i_CaL and i_CaL;
  enddef;
  def map between delayed_rectifying_potassium_current and ion_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_KK and i_KK;
    vars i_KNa and i_KNa;
  enddef;
  def map between sodium_potassium_pump and ion_concentrations for
    vars Nai and Nai;
    vars Ko and Ko;
    vars i_p and i_p;
  enddef;
  def map between sodium_calcium_exchange_current and ion_concentrations for
    vars Nao and Nao;
    vars Nai and Nai;
    vars Cao and Cao;
    vars Cai and Cai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between ACh_activated_potassium_current and ion_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_KACh and i_KACh;
  enddef;
  def map between sarcoplasmic_reticulum_kinetics and ion_concentrations for
    vars Cai and Cai;
    vars Caup and Caup;
    vars Carel and Carel;
    vars i_tr and i_tr;
    vars i_up and i_up;
    vars i_rel and i_rel;
    vars V_up and V_up;
    vars V_rel and V_rel;
  enddef;
  def map between T_type_calcium_current and ion_concentrations for
    vars i_CaT and i_CaT;
  enddef;
  def map between fast_sodium_current and ion_concentrations for
    vars i_Na and i_Na;
  enddef;
  def map between hyperpolarising_activated_current and ion_concentrations for
    vars i_fNa and i_fNa;
    vars i_fK and i_fK;
    vars Ko and Ko;
  enddef;
  def map between background_sodium_current and ion_concentrations for
    vars i_bNa and i_bNa;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_d_gate for
    vars d and d;
    vars time and time;
    vars E and E;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_f_gate for
    vars f and f;
    vars time and time;
    vars E and E;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars E and E;
    vars Cai and Cai;
  enddef;
  def map between L_type_calcium_current and L_type_calcium_current_w_gate for
    vars w and w;
    vars time and time;
    vars ACh and ACh;
  enddef;
  def map between T_type_calcium_current and T_type_calcium_current_d_gate for
    vars d and d;
    vars time and time;
    vars E and E;
  enddef;
  def map between T_type_calcium_current and T_type_calcium_current_f_gate for
    vars f and f;
    vars time and time;
    vars E and E;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars E and E;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars E and E;
  enddef;
  def map between delayed_rectifying_potassium_current and delayed_rectifying_potassium_current_x_gate for
    vars x and x;
    vars time and time;
    vars E and E;
  enddef;
  def map between hyperpolarising_activated_current and hyperpolarising_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars E and E;
    vars ACh and ACh;
  enddef;
  def map between L_type_calcium_current and ACh_kinetics_in_neuroeffector_junction for
    vars ACh and ACh;
  enddef;
  def map between hyperpolarising_activated_current and ACh_kinetics_in_neuroeffector_junction for
    vars ACh and ACh;
  enddef;
  def map between ACh_activated_potassium_current and ACh_kinetics_in_neuroeffector_junction for
    vars ACh and ACh;
  enddef;
  def map between ACh_activated_potassium_current and ACh_activated_potassium_current_u_gate for
    vars u and u;
    vars time and time;
    vars ACh and ACh;
  enddef;
  def map between ACh_kinetics_in_neuroeffector_junction and environment for
    vars time and time;
  enddef;
enddef;
