def model FCU_cardiacAP_composite as
  def import using "units_and_constants/units_BG.cellml" for
    unit mM using unit mM;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit J_per_mol using unit J_per_mol;
    unit fmol_per_sec using unit fmol_per_sec;
    unit C_per_mol using unit C_per_mol;
    unit J_per_C using unit J_per_C;
    unit microm3 using unit microm3;
    unit fF using unit fF;
    unit fC using unit fC;
    unit fA using unit fA;
    unit per_second using unit per_second;
    unit millivolt using unit millivolt;
    unit per_sec using unit per_sec;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit fmol_per_L using unit fmol_per_L;
    unit fmol_per_L_per_sec using unit fmol_per_L_per_sec;
    unit per_sec_per_fmol_per_L using unit per_sec_per_fmol_per_L;
    unit uM using unit uM;
    unit mM_per_sec using unit mM_per_sec;
    unit uM_per_sec using unit uM_per_sec;
    unit pL using unit pL;
    unit m_to_u using unit m_to_u;
  enddef;
  def import using "units_and_constants/constants_BG.cellml" for
    comp constants using comp constants;
  enddef;
  def import using "CaB/BG_CaB.cellml" for
    comp CaB using comp CaB;
  enddef;
  def import using "Ca_leak/BG_Ca_leak.cellml" for
    comp Ca_leak using comp Ca_leak;
  enddef;
  def import using "CMDN_buffer/BG_CMDN_buffer.cellml" for
    comp CMDN_buffer using comp CMDN_buffer;
  enddef;
  def import using "fast_Na/BG_fast_Na.cellml" for
    comp fast_Na using comp fast_Na;
  enddef;
  def import using "K_ATP/BG_K_ATP.cellml" for
    comp K_ATP using comp K_ATP;
  enddef;
  def import using "K1/BG_K1.cellml" for
    comp K1 using comp K1;
  enddef;
  def import using "K/BG_K.cellml" for
    comp K using comp K;
  enddef;
  def import using "Kp/BG_Kp.cellml" for
    comp Kp using comp Kp;
  enddef;
  def import using "Kr/BG_Kr.cellml" for
    comp Kr using comp Kr;
  enddef;
  def import using "Ks/BG_Ks.cellml" for
    comp Ks using comp Ks;
  enddef;
  def import using "LCC/BG_LCC.cellml" for
    comp LCC using comp LCC;
  enddef;
  def import using "NaK/BG_NaK.cellml" for
    comp NaK using comp NaK;
  enddef;
  def import using "NaB/BG_NaB.cellml" for
    comp NaB using comp NaB;
  enddef;
  def import using "NCX/BG_NCX.cellml" for
    comp NCX using comp NCX;
  enddef;
  def import using "ns/BG_ns.cellml" for
    comp ns using comp ns;
  enddef;
  def import using "pCa/BG_pCa.cellml" for
    comp pCa using comp pCa;
  enddef;
  def import using "SERCA/BG_SERCA.cellml" for
    comp SERCA using comp SERCA;
  enddef;
  def import using "TCC/BG_TCC.cellml" for
    comp TCC using comp TCC;
  enddef;
  def import using "TO/BG_TO.cellml" for
    comp TO using comp TO;
  enddef;
  def import using "TRPN_buffer/BG_TRPN_buffer.cellml" for
    comp TRPN_buffer using comp TRPN_buffer;
  enddef;
  def import using "funny/BG_funny.cellml" for
    comp funny using comp funny;
  enddef;

  def comp BG_parameters as
    var kappa_b2: fmol_per_sec {init: 1378.18, pub: out};
    var kappa_CaB: fmol_per_sec {init: 0.0183281, pub: out};
    var kappa_K1: fmol_per_sec {init: 14.666, pub: out};
    var kappa_gK1: fmol_per_sec {init: 1013.54, pub: out};
    var kappa_Kr: fmol_per_sec {init: 334039, pub: out};
    var kappa_xr10: fmol_per_sec {init: 2.51352, pub: out};
    var kappa_xr11: fmol_per_sec {init: 0.0672974, pub: out};
    var kappa_xr20: fmol_per_sec {init: 8.45146, pub: out};
    var kappa_xr21: fmol_per_sec {init: 68.9799, pub: out};
    var kappa_Ks: fmol_per_sec {init: 17067.3, pub: out};
    var kappa_xs1: fmol_per_sec {init: 0.523159, pub: out};
    var kappa_xs2: fmol_per_sec {init: 1.86539, pub: out};
    var kappa_LCC_Ca1: fmol_per_sec {init: 15.7563, pub: out};
    var kappa_LCC_Ca2: fmol_per_sec {init: 20.7455, pub: out};
    var kappa_LCC_K1: fmol_per_sec {init: 0.0260278, pub: out};
    var kappa_LCC_K2: fmol_per_sec {init: 0.0342693, pub: out};
    var kappa_d000: fmol_per_sec {init: 204.525, pub: out};
    var kappa_d010: fmol_per_sec {init: 10.3285, pub: out};
    var kappa_d020: fmol_per_sec {init: 13.5989, pub: out};
    var kappa_d001: fmol_per_sec {init: 0.148452, pub: out};
    var kappa_d011: fmol_per_sec {init: 0.0074968, pub: out};
    var kappa_d021: fmol_per_sec {init: 0.0098706, pub: out};
    var kappa_f1_000: fmol_per_sec {init: 19.7008, pub: out};
    var kappa_f1_100: fmol_per_sec {init: 97.8293, pub: out};
    var kappa_f1_001: fmol_per_sec {init: 0.0142996, pub: out};
    var kappa_f1_101: fmol_per_sec {init: 0.071008, pub: out};
    var kappa_f2_000: fmol_per_sec {init: 1.28048, pub: out};
    var kappa_f2_100: fmol_per_sec {init: 6.35855, pub: out};
    var kappa_f2_001: fmol_per_sec {init: 0.00092942, pub: out};
    var kappa_f2_101: fmol_per_sec {init: 0.00461527, pub: out};
    var kappa_f3_010: fmol_per_sec {init: 2793.76, pub: out};
    var kappa_f3_110: fmol_per_sec {init: 13873.1, pub: out};
    var kappa_f3_011: fmol_per_sec {init: 2.02781, pub: out};
    var kappa_f3_111: fmol_per_sec {init: 10.0696, pub: out};
    var kappa_fCa000: fmol_per_sec {init: 50829.8, pub: out};
    var kappa_fCa100: fmol_per_sec {init: 252408, pub: out};
    var kappa_fCa010: fmol_per_sec {init: 2566.9, pub: out};
    var kappa_fCa110: fmol_per_sec {init: 12746.6, pub: out};
    var kappa_fCa020: fmol_per_sec {init: 3379.68, pub: out};
    var kappa_fCa120: fmol_per_sec {init: 16782.7, pub: out};
    var kappa_1_NCX: fmol_per_sec {init: 271903, pub: out};
    var kappa_2_NCX: fmol_per_sec {init: 2.57553e+07, pub: out};
    var kappa_3_NCX: fmol_per_sec {init: 11359.8, pub: out};
    var kappa_4_NCX: fmol_per_sec {init: 3.65342e+07, pub: out};
    var kappa_5_NCX: fmol_per_sec {init: 191683, pub: out};
    var kappa_6_NCX: fmol_per_sec {init: 4.30573, pub: out};
    var kappa_NaB: fmol_per_sec {init: 0.00105236, pub: out};
    var kappa_1_NaK: fmol_per_sec {init: 136.681, pub: out};
    var kappa_2_NaK: fmol_per_sec {init: 226141, pub: out};
    var kappa_3_NaK: fmol_per_sec {init: 640981, pub: out};
    var kappa_4_NaK: fmol_per_sec {init: 3.26998e+06, pub: out};
    var kappa_5_NaK: fmol_per_sec {init: 7193.8, pub: out};
    var kappa_6_NaK: fmol_per_sec {init: 10.2382, pub: out};
    var kappa_7_NaK: fmol_per_sec {init: 1.90007, pub: out};
    var kappa_8_NaK: fmol_per_sec {init: 1.82292, pub: out};
    var kappa_9_NaK: fmol_per_sec {init: 2259.11, pub: out};
    var kappa_10_NaK: fmol_per_sec {init: 699917, pub: out};
    var kappa_11_NaK: fmol_per_sec {init: 207331, pub: out};
    var kappa_12_NaK: fmol_per_sec {init: 1.94572e+06, pub: out};
    var kappa_13_NaK: fmol_per_sec {init: 174.89, pub: out};
    var kappa_14_NaK: fmol_per_sec {init: 29.3512, pub: out};
    var kappa_15_NaK: fmol_per_sec {init: 0.00640463, pub: out};
    var kappa_TCC: fmol_per_sec {init: 82302, pub: out};
    var kappa_R1_TCC: fmol_per_sec {init: 1266.14, pub: out};
    var kappa_R2_TCC: fmol_per_sec {init: 4.33488, pub: out};
    var kappa_R3_TCC: fmol_per_sec {init: 1.34962, pub: out};
    var kappa_R4_TCC: fmol_per_sec {init: 7.44777, pub: out};
    var kappa_b1: fmol_per_sec {init: 819.29, pub: out};
    var kappa_Na: fmol_per_sec {init: 23.803, pub: out};
    var kappa_m000: fmol_per_sec {init: 5.15505e+06, pub: out};
    var kappa_m001: fmol_per_sec {init: 1.5948, pub: out};
    var kappa_m010: fmol_per_sec {init: 2.16147, pub: out};
    var kappa_m011: fmol_per_sec {init: 6.68688e-07, pub: out};
    var kappa_m100: fmol_per_sec {init: 1.61308e+09, pub: out};
    var kappa_m101: fmol_per_sec {init: 499.033, pub: out};
    var kappa_m110: fmol_per_sec {init: 676.351, pub: out};
    var kappa_m111: fmol_per_sec {init: 0.000209241, pub: out};
    var kappa_m200: fmol_per_sec {init: 1.26188e+11, pub: out};
    var kappa_m201: fmol_per_sec {init: 39038.3, pub: out};
    var kappa_m210: fmol_per_sec {init: 52909.6, pub: out};
    var kappa_m211: fmol_per_sec {init: 0.0163685, pub: out};
    var kappa_h000: fmol_per_sec {init: 0.0460452, pub: out};
    var kappa_h001: fmol_per_sec {init: 1.42449e-08, pub: out};
    var kappa_h100: fmol_per_sec {init: 21.6122, pub: out};
    var kappa_h101: fmol_per_sec {init: 6.68609e-06, pub: out};
    var kappa_h200: fmol_per_sec {init: 3381.36, pub: out};
    var kappa_h201: fmol_per_sec {init: 0.00104608, pub: out};
    var kappa_h300: fmol_per_sec {init: 176345, pub: out};
    var kappa_h301: fmol_per_sec {init: 0.0545552, pub: out};
    var kappa_j000: fmol_per_sec {init: 0.0179554, pub: out};
    var kappa_j010: fmol_per_sec {init: 7.52858e-09, pub: out};
    var kappa_j100: fmol_per_sec {init: 8.42771, pub: out};
    var kappa_j110: fmol_per_sec {init: 3.53368e-06, pub: out};
    var kappa_j200: fmol_per_sec {init: 1318.57, pub: out};
    var kappa_j210: fmol_per_sec {init: 0.000552865, pub: out};
    var kappa_j300: fmol_per_sec {init: 68766, pub: out};
    var kappa_j310: fmol_per_sec {init: 0.0288331, pub: out};
    var kappa_funny_Na: fmol_per_sec {init: 0.0938275, pub: out};
    var kappa_funny_K: fmol_per_sec {init: 0.000878706, pub: out};
    var kappa_R_xf: fmol_per_sec {init: 0.188833, pub: out};
    var kappa_pCa_R1: fmol_per_sec {init: 25090.5, pub: out};
    var kappa_pCa_R2: fmol_per_sec {init: 3.48165e-05, pub: out};
    var kappa_leak: fmol_per_sec {init: 0, pub: out};
    var kappa_K: fmol_per_sec {init: 0, pub: out};
    var kappa_X00_K: fmol_per_sec {init: 0, pub: out};
    var kappa_X10_K: fmol_per_sec {init: 0, pub: out};
    var kappa_X01_K: fmol_per_sec {init: 0, pub: out};
    var kappa_X11_K: fmol_per_sec {init: 0, pub: out};
    var kappa_i00_K: fmol_per_sec {init: 0, pub: out};
    var kappa_i10_K: fmol_per_sec {init: 0, pub: out};
    var kappa_i20_K: fmol_per_sec {init: 0, pub: out};
    var kappa_Kp: fmol_per_sec {init: 0, pub: out};
    var kappa_gKp: fmol_per_sec {init: 0, pub: out};
    var kappa_K_ATP: fmol_per_sec {init: 0, pub: out};
    var kappa_ns_Ca: fmol_per_sec {init: 0, pub: out};
    var kappa_ns_Na: fmol_per_sec {init: 0, pub: out};
    var kappa_ns_K: fmol_per_sec {init: 0, pub: out};
    var kappa_OC: fmol_per_sec {init: 0, pub: out};
    var kappa_CCI: fmol_per_sec {init: 0, pub: out};
    var kappa_CII: fmol_per_sec {init: 0, pub: out};
    var kappa_IO: fmol_per_sec {init: 0, pub: out};
    var kappa_SERCA_R1_2: fmol_per_sec {init: 0, pub: out};
    var kappa_SERCA_R2_4: fmol_per_sec {init: 0, pub: out};
    var kappa_SERCA_R2_2a: fmol_per_sec {init: 0, pub: out};
    var kappa_SERCA_R4_5: fmol_per_sec {init: 0, pub: out};
    var kappa_SERCA_R5_6: fmol_per_sec {init: 0, pub: out};
    var kappa_SERCA_R6_8: fmol_per_sec {init: 0, pub: out};
    var kappa_SERCA_R8_9: fmol_per_sec {init: 0, pub: out};
    var kappa_SERCA_R9_10: fmol_per_sec {init: 0, pub: out};
    var kappa_SERCA_R10_1: fmol_per_sec {init: 0, pub: out};
    var kappa_TO: fmol_per_sec {init: 0, pub: out};
    var kappa_gTO_1: fmol_per_sec {init: 0, pub: out};
    var kappa_gTO_2: fmol_per_sec {init: 0, pub: out};
    var kappa_gTO_3: fmol_per_sec {init: 0, pub: out};
    var kappa_gTO_4: fmol_per_sec {init: 0, pub: out};
    var K_Ca_i: per_fmol {init: 0.245066, pub: out};
    var K_CMDN: per_fmol {init: 215.111, pub: out};
    var K_CMDN_Ca: per_fmol {init: 0.465475, pub: out};
    var K_Ca_o: per_fmol {init: 0.372683, pub: out};
    var K_K_i: per_fmol {init: 0.0531066, pub: out};
    var K_K_o: per_fmol {init: 0.389448, pub: out};
    var K_C_K1: per_fmol {init: 1.11228, pub: out};
    var K_O_K1: per_fmol {init: 13363.9, pub: out};
    var K_Sa_Kr: per_fmol {init: 1.47312, pub: out};
    var K_Sb_Kr: per_fmol {init: 0.180487, pub: out};
    var K_Sc_Kr: per_fmol {init: 55.02, pub: out};
    var K_Sd_Kr: per_fmol {init: 6.74109, pub: out};
    var K_S_Ks0: per_fmol {init: 4.456, pub: out};
    var K_S_Ks1: per_fmol {init: 0.624857, pub: out};
    var K_S_Ks2: per_fmol {init: 0.350491, pub: out};
    var K_000_LCC: per_fmol {init: 2.37996, pub: out};
    var K_010_LCC: per_fmol {init: 47.128, pub: out};
    var K_020_LCC: per_fmol {init: 35.7941, pub: out};
    var K_100_LCC: per_fmol {init: 0.479275, pub: out};
    var K_110_LCC: per_fmol {init: 9.49062, pub: out};
    var K_120_LCC: per_fmol {init: 7.2082, pub: out};
    var K_001_LCC: per_fmol {init: 3278.92, pub: out};
    var K_011_LCC: per_fmol {init: 64929.3, pub: out};
    var K_021_LCC: per_fmol {init: 49314.3, pub: out};
    var K_101_LCC: per_fmol {init: 660.307, pub: out};
    var K_111_LCC: per_fmol {init: 13075.4, pub: out};
    var K_121_LCC: per_fmol {init: 9930.89, pub: out};
    var K_1_NCX: per_fmol {init: 2.91306e+08, pub: out};
    var K_2_NCX: per_fmol {init: 295.736, pub: out};
    var K_3_NCX: per_fmol {init: 45889.7, pub: out};
    var K_4_NCX: per_fmol {init: 70380.8, pub: out};
    var K_5_NCX: per_fmol {init: 9.6036e+07, pub: out};
    var K_6_NCX: per_fmol {init: 89.7689, pub: out};
    var K_Na_i: per_fmol {init: 0.0187362, pub: out};
    var K_Na_o: per_fmol {init: 0.115363, pub: out};
    var K_1_NaK: per_fmol {init: 2.45754e+08, pub: out};
    var K_2_NaK: per_fmol {init: 37133.9, pub: out};
    var K_3_NaK: per_fmol {init: 22.4439, pub: out};
    var K_4_NaK: per_fmol {init: 4.39946, pub: out};
    var K_5_NaK: per_fmol {init: 3.44953, pub: out};
    var K_6_NaK: per_fmol {init: 139.009, pub: out};
    var K_7_NaK: per_fmol {init: 6086.52, pub: out};
    var K_8_NaK: per_fmol {init: 19133.7, pub: out};
    var K_9_NaK: per_fmol {init: 9.39922e+06, pub: out};
    var K_10_NaK: per_fmol {init: 7584.42, pub: out};
    var K_11_NaK: per_fmol {init: 24.4801, pub: out};
    var K_12_NaK: per_fmol {init: 2.60855, pub: out};
    var K_13_NaK: per_fmol {init: 1.11184, pub: out};
    var K_14_NaK: per_fmol {init: 284.544, pub: out};
    var K_15_NaK: per_fmol {init: 4.78246e+06, pub: out};
    var K_MgATP: per_fmol {init: 32.2739, pub: out};
    var K_MgADP: per_fmol {init: 0.000977143, pub: out};
    var K_Pi: per_fmol {init: 0.640547, pub: out};
    var K_H: per_fmol {init: 0.640547, pub: out};
    var K_S00_TCC: per_fmol {init: 2.10659, pub: out};
    var K_S10_TCC: per_fmol {init: 0.381738, pub: out};
    var K_S01_TCC: per_fmol {init: 615.294, pub: out};
    var K_S11_TCC: per_fmol {init: 111.498, pub: out};
    var K_TRPN: per_fmol {init: 361.853, pub: out};
    var K_TRPN_Ca: per_fmol {init: 0.164497, pub: out};
    var K_000_Na: per_fmol {init: 0.00728399, pub: out};
    var K_100_Na: per_fmol {init: 1.55187e-05, pub: out};
    var K_200_Na: per_fmol {init: 9.9189e-08, pub: out};
    var K_300_Na: per_fmol {init: 1.90192e-09, pub: out};
    var K_010_Na: per_fmol {init: 17372.1, pub: out};
    var K_110_Na: per_fmol {init: 37.0117, pub: out};
    var K_210_Na: per_fmol {init: 0.236563, pub: out};
    var K_310_Na: per_fmol {init: 0.00453602, pub: out};
    var K_001_Na: per_fmol {init: 23544.9, pub: out};
    var K_101_Na: per_fmol {init: 50.1629, pub: out};
    var K_201_Na: per_fmol {init: 0.320619, pub: out};
    var K_301_Na: per_fmol {init: 0.00614778, pub: out};
    var K_011_Na: per_fmol {init: 5.61538e+10, pub: out};
    var K_111_Na: per_fmol {init: 1.19637e+08, pub: out};
    var K_211_Na: per_fmol {init: 764668, pub: out};
    var K_311_Na: per_fmol {init: 14662.3, pub: out};
    var K_x0_funny: per_fmol {init: 0.00306604, pub: out};
    var K_x1_funny: per_fmol {init: 61.5887, pub: out};
    var K_pCa: per_fmol {init: 0.465601, pub: out};
    var K_pCa_Ca: per_fmol {init: 0.136312, pub: out};
    var K_Ca_SR: per_fmol {init: 1e-6, pub: out};
    var K_S00_K: per_fmol {init: 1e-6, pub: out};
    var K_S10_K: per_fmol {init: 1e-6, pub: out};
    var K_S20_K: per_fmol {init: 1e-6, pub: out};
    var K_S01_K: per_fmol {init: 1e-6, pub: out};
    var K_S11_K: per_fmol {init: 1e-6, pub: out};
    var K_S21_K: per_fmol {init: 1e-6, pub: out};
    var K_C_Kp: per_fmol {init: 1e-6, pub: out};
    var K_O_Kp: per_fmol {init: 1e-6, pub: out};
    var K_P1_SERCA: per_fmol {init: 1e-6, pub: out};
    var K_P2_SERCA: per_fmol {init: 1e-6, pub: out};
    var K_P2a_SERCA: per_fmol {init: 1e-6, pub: out};
    var K_P4_SERCA: per_fmol {init: 1e-6, pub: out};
    var K_P5_SERCA: per_fmol {init: 1e-6, pub: out};
    var K_P6_SERCA: per_fmol {init: 1e-6, pub: out};
    var K_P8_SERCA: per_fmol {init: 1e-6, pub: out};
    var K_P9_SERCA: per_fmol {init: 1e-6, pub: out};
    var K_P10_SERCA: per_fmol {init: 1e-6, pub: out};
    var K_r0s0_TO: per_fmol {init: 1e-6, pub: out};
    var K_r1s0_TO: per_fmol {init: 1e-6, pub: out};
    var K_r0s1_TO: per_fmol {init: 1e-6, pub: out};
    var K_r1s1_TO: per_fmol {init: 1e-6, pub: out};
    var zCa: dimensionless {init: 2, pub: out};
    var zK: dimensionless {init: 1, pub: out};
    var z_fK1: dimensionless {init: 0.033569, pub: out};
    var z_rK1: dimensionless {init: 3.1153, pub: out};
    var z_f_Kp: dimensionless {init: 0, pub: out};
    var z_r_Kp: dimensionless {init: -4.4669, pub: out};
    var z_xr1_f: dimensionless {init: 1.6149028778859738, pub: out};
    var z_xr1_r: dimensionless {init: -1.3218634652232777, pub: out};
    var z_xr2_f: dimensionless {init: -1.0273976425216251, pub: out};
    var z_xr2_r: dimensionless {init: -0.18153135376657775, pub: out};
    var z_xs_f: dimensionless {init: 0.000400323747581994, pub: out};
    var z_xs_r: dimensionless {init: -1.41544821457997, pub: out};
    var zf_NCX: dimensionless {init: -0.55679, pub: out};
    var zr_NCX: dimensionless {init: 0.44321, pub: out};
    var nNa_o_NCX: dimensionless {init: 3, pub: out};
    var nNa_i_NCX: dimensionless {init: 3, pub: out};
    var zNa: dimensionless {init: 1, pub: out};
    var zF_5: C_per_mol {init: -5301.979, pub: out};
    var zF_8: C_per_mol {init: -91183.021, pub: out};
    var z_df: dimensionless {init: 0.876568910405296, pub: out};
    var z_ff: dimensionless {init: -0.576510778245838, pub: out};
    var z_dr: dimensionless {init: -0.872117216889333, pub: out};
    var z_fr: dimensionless {init: 1.73582739545622, pub: out};
    var z_rTO_f: dimensionless {init: 2.28623234372134, pub: out};
    var z_sTO_f: dimensionless {init: -1.51477720975217, pub: out};
    var z_rTO_r: dimensionless {init: -0.131848324558065, pub: out};
    var z_sTO_r: dimensionless {init: 1.75042355789096, pub: out};
    var z_fh: dimensionless {init: -4.1892, pub: out};
    var z_fj: dimensionless {init: -4.0381, pub: out};
    var z_fm: dimensionless {init: 0.49541, pub: out};
    var z_rh: dimensionless {init: 1.2995, pub: out};
    var z_rj: dimensionless {init: 1.4281, pub: out};
    var z_rm: dimensionless {init: -2.4284, pub: out};
    var z_xff: dimensionless {init: -2.29569, pub: out};
    var z_xfr: dimensionless {init: 0.707659, pub: out};
    var z_fd: dimensionless {init: 2.1404, pub: out};
    var z_ff1: dimensionless {init: -1.1495, pub: out};
    var z_ff2: dimensionless {init: 0.72162, pub: out};
    var z_ff3: dimensionless {init: 4.2933, pub: out};
    var z_rCa: dimensionless {init: 2, pub: out};
    var z_rd: dimensionless {init: -2.1404, pub: out};
    var z_rf1: dimensionless {init: 1.8993, pub: out};
    var z_rf2: dimensionless {init: -0.52288, pub: out};
    var z_rf3: dimensionless {init: 0, pub: out};
    var nK: dimensionless {init: 0.5, pub: out};
    var z_fX: dimensionless {init: 0.51923, pub: out};
    var z_fXi: dimensionless {init: 0, pub: out};
    var z_rX: dimensionless {init: -0.73169, pub: out};
    var z_rXi: dimensionless {init: 0.83216, pub: out};
  enddef;

  def comp environment as
    var t: second {pub: out};
    var vol_myo: pL {init: 3.71, pub: out};
    var C_m: fF {init: 60e3, pub: out};
    var q_Ca_i: fmol {init: 0.000813639, pub: out};
    var q_Ca_o: fmol {init: 0.911127273, pub: out};
    var q_Ca_SR: fmol {init: 0.074590321, pub: out};
    // var q_CMDN: fmol {init: 0.176596, pub: out};
    var q_CMDN: fmol {init: 88.298, pub: out};
    var q_CMDN_Ca: fmol {init: 0.008904, pub: out};
    var q_Na_i: fmol {init: 26.61236736, pub: out};
    var q_Na_o: fmol {init: 70.86545455, pub: out};
    var q_K_i: fmol {init: 388.8276362, pub: out};
    var q_K_o: fmol {init: 2.733381818, pub: out};
    var q_MgATP: fmol {init: 25.7845, pub: out};
    var q_MgADP: fmol {init: 0.12985, pub: out};
    var q_Pi: fmol {init: 1.473241, pub: out};
    var q_H: fmol {init: 0.000298108, pub: out};
    var q_pCa: fmol {init: 1.82664e-7, pub: out};
    var q_pCa_Ca: fmol {init: 1.82664e-7, pub: out};
    // var q_TRPN: fmol {init: 0.209439263, pub: out};
    var q_TRPN: fmol {init: 104.7196316, pub: out};
    var q_TRPN_Ca: fmol {init: 0.050264642, pub: out};
    var q_mem: fC {init: -4535.796, pub: out};
    var V_mem: J_per_C {pub: out};
    // channel gate molar amounts
    var q_S00_K: fmol {init: 2.13107e-07, pub: out};
    var q_S10_K: fmol {init: 2.13107e-07, pub: out};
    var q_S20_K: fmol {init: 2.13107e-07, pub: out};
    var q_S01_K: fmol {init: 2.13107e-07, pub: out};
    var q_S11_K: fmol {init: 2.13107e-07, pub: out};
    var q_S21_K: fmol {init: 2.13107e-07, pub: out};
    var q_C_K1: fmol {init: 1.01378e-06, pub: out};
    var q_O_K1: fmol {init: 1.01378e-06, pub: out};
    var q_C_Kp: fmol {init: 8.67652e-08, pub: out};
    var q_O_Kp: fmol {init: 8.67652e-08, pub: out};
    var q_Sa_Kr: fmol {init: 3.19661e-07, pub: out};
    var q_Sb_Kr: fmol {init: 3.19661e-07, pub: out};
    var q_Sc_Kr: fmol {init: 3.19661e-07, pub: out};
    var q_Sd_Kr: fmol {init: 3.19661e-07, pub: out};
    var q_S_Ks0: fmol {init: 4.26215e-07, pub: out};
    var q_S_Ks1: fmol {init: 4.26215e-07, pub: out};
    var q_S_Ks2: fmol {init: 4.26215e-07, pub: out};
    var q_000_LCC: fmol {init: 1.97886e-06, pub: out};
    var q_010_LCC: fmol {init: 1.97886e-06, pub: out};
    var q_020_LCC: fmol {init: 1.97886e-06, pub: out};
    var q_100_LCC: fmol {init: 1.97886e-06, pub: out};
    var q_110_LCC: fmol {init: 1.97886e-06, pub: out};
    var q_120_LCC: fmol {init: 1.97886e-06, pub: out};
    var q_001_LCC: fmol {init: 1.97886e-06, pub: out};
    var q_011_LCC: fmol {init: 1.97886e-06, pub: out};
    var q_021_LCC: fmol {init: 1.97886e-06, pub: out};
    var q_101_LCC: fmol {init: 1.97886e-06, pub: out};
    var q_111_LCC: fmol {init: 1.97886e-06, pub: out};
    var q_121_LCC: fmol {init: 1.97886e-06, pub: out};
    var q_S00_TCC: fmol {init: 1.36998e-05, pub: out};
    var q_S10_TCC: fmol {init: 1.36998e-05, pub: out};
    var q_S01_TCC: fmol {init: 1.36998e-05, pub: out};
    var q_S11_TCC: fmol {init: 1.36998e-05, pub: out};
    var q_r0s0_TO: fmol {init: 9.13318e-08, pub: out};
    var q_r1s0_TO: fmol {init: 9.13318e-08, pub: out};
    var q_r0s1_TO: fmol {init: 9.13318e-08, pub: out};
    var q_r1s1_TO: fmol {init: 9.13318e-08, pub: out};
    var q_000_Na: fmol {init: 3.65327e-06, pub: out};
    var q_100_Na: fmol {init: 3.65327e-06, pub: out};
    var q_200_Na: fmol {init: 3.65327e-06, pub: out};
    var q_300_Na: fmol {init: 3.65327e-06, pub: out};
    var q_010_Na: fmol {init: 3.65327e-06, pub: out};
    var q_110_Na: fmol {init: 3.65327e-06, pub: out};
    var q_210_Na: fmol {init: 3.65327e-06, pub: out};
    var q_310_Na: fmol {init: 3.65327e-06, pub: out};
    var q_001_Na: fmol {init: 3.65327e-06, pub: out};
    var q_101_Na: fmol {init: 3.65327e-06, pub: out};
    var q_201_Na: fmol {init: 3.65327e-06, pub: out};
    var q_301_Na: fmol {init: 3.65327e-06, pub: out};
    var q_011_Na: fmol {init: 3.65327e-06, pub: out};
    var q_111_Na: fmol {init: 3.65327e-06, pub: out};
    var q_211_Na: fmol {init: 3.65327e-06, pub: out};
    var q_311_Na: fmol {init: 3.65327e-06, pub: out};
    // var q_x0_funny: fmol {init: 9.13318e-07, pub: out};
    // var q_x1_funny: fmol {init: 9.13318e-07, pub: out};
    var q_x0_funny: fmol {init: 1.82664e-07, pub: out};
    var q_x1_funny: fmol {init: 1.82664e-07, pub: out};
    var q_P7: fmol {init: 7.6683E-04, pub: out};
    var q_P14: fmol {init: 7.6683E-04, pub: out};
    var q_P15: fmol {init: 7.6683E-04, pub: out};
    var q_P1: fmol {init: 7.6683E-04, pub: out};
    var q_P2: fmol {init: 7.6683E-04, pub: out};
    var q_P3: fmol {init: 7.6683E-04, pub: out};
    var q_P4: fmol {init: 7.6683E-04, pub: out};
    var q_P5: fmol {init: 7.6683E-04, pub: out};
    var q_P6: fmol {init: 7.6683E-04, pub: out};
    var q_P10: fmol {init: 7.6683E-04, pub: out};
    var q_P11: fmol {init: 7.6683E-04, pub: out};
    var q_P12: fmol {init: 7.6683E-04, pub: out};
    var q_P13: fmol {init: 7.6683E-04, pub: out};
    var q_P8: fmol {init: 7.6683E-04, pub: out};
    var q_P9: fmol {init: 7.6683E-04, pub: out};
    var q_P1_NCX: fmol {init: 7.04646E-05, pub: out};
    var q_P2_NCX: fmol {init: 7.04646E-05, pub: out};
    var q_P3_NCX: fmol {init: 7.04646E-05, pub: out};
    var q_P4_NCX: fmol {init: 7.04646E-05, pub: out};
    var q_P5_NCX: fmol {init: 7.04646E-05, pub: out};
    var q_P6_NCX: fmol {init: 7.04646E-05, pub: out};
    var q_P1_SERCA: fmol {init: 4.05919e-15, pub: out};
    var q_P2_SERCA: fmol {init: 4.05919e-15, pub: out};
    var q_P2a_SERCA: fmol {init: 4.05919e-15, pub: out};
    var q_P4_SERCA: fmol {init: 4.05919e-15, pub: out};
    var q_P5_SERCA: fmol {init: 4.05919e-15, pub: out};
    var q_P6_SERCA: fmol {init: 4.05919e-15, pub: out};
    var q_P8_SERCA: fmol {init: 4.05919e-15, pub: out};
    var q_P9_SERCA: fmol {init: 4.05919e-15, pub: out};
    var q_P10_SERCA: fmol {init: 4.05919e-15, pub: out};
    V_mem = q_mem/C_m;
    var I_stim: fA;
    var stimPeriod: second {init: 1};
    var stimDuration: second {init: 0.0001};
    var tPeriod: second;
    tPeriod = t-floor(t/stimPeriod)*stimPeriod;
    I_stim = sel
      case (tPeriod >= 0.3{second}) and (tPeriod <= 0.3{second}+stimDuration):
        1{dimensionless}*0.075{volt}*C_m/stimDuration;
      otherwise:
        0.0{fA};
    endsel;
    // CaB imports
    var v_CaB: fmol_per_sec {pub: in};
    var I_mem_CaB: fA {pub: in};
    // Ca_leak imports
    var v_leak: fmol_per_sec {pub: in};
    // CMDN_buffer imports
    var v_b2: fmol_per_sec {pub: in};
    // fast_Na imports
    var v_Na: fmol_per_sec {pub: in};
    var I_mem_Na: fA {pub: in};
    // funny imports
    var v_funny_K: fmol_per_sec {pub: in};
    var v_funny_Na: fmol_per_sec {pub: in};
    var I_mem_funny: fA {pub: in};
    // K imports
    var v_K: fmol_per_sec {pub: in};
    var I_mem_K: fA {pub: in};
    // K_ATP imports
    var v_K_ATP: fmol_per_sec {pub: in};
    var I_mem_K_ATP: fA {pub: in};
    // K1 imports
    var v_K1: fmol_per_sec {pub: in};
    var I_mem_K1: fA {pub: in};
    // Kp imports
    var v_Kp: fmol_per_sec {pub: in};
    var I_mem_Kp: fA {pub: in};
    // Kr imports
    var v_Kr: fmol_per_sec {pub: in};
    var I_mem_Kr: fA {pub: in};
    // Ks imports
    var v_Ks: fmol_per_sec {pub: in};
    var I_mem_Ks: fA {pub: in};
    // LCC imports
    var v_Ca_o_LCC: fmol_per_sec {pub: in};
    var v_Ca_i_LCC: fmol_per_sec {pub: in};
    var v_K_o_LCC: fmol_per_sec {pub: in};
    var v_K_i_LCC: fmol_per_sec {pub: in};
    var I_mem_LCC: fA {pub: in};
    // NaK imports
    var v_K_o_NaK: fmol_per_sec {pub: in};
    var v_K_i_NaK: fmol_per_sec {pub: in};
    var v_Na_o_NaK: fmol_per_sec {pub: in};
    var v_Na_i_NaK: fmol_per_sec {pub: in};
    var v_H_NaK: fmol_per_sec {pub: in};
    var v_MgADP_NaK: fmol_per_sec {pub: in};
    var v_MgATP_NaK: fmol_per_sec {pub: in};
    var v_Pi_NaK: fmol_per_sec {pub: in};
    var I_mem_NaK: fA {pub: in};
    // NaB imports
    var v_NaB: fmol_per_sec {pub: in};
    var I_mem_NaB: fA {pub: in};
    // ns imports
    var v_ns_Ca: fmol_per_sec {pub: in};
    var v_ns_Na: fmol_per_sec {pub: in};
    var v_ns_K: fmol_per_sec {pub: in};
    var I_mem_ns_Ca: fA {pub: in};
    var I_mem_ns_Na: fA {pub: in};
    var I_mem_ns_K: fA {pub: in};
    // NCX imports
    var v_Ca_o_NCX: fmol_per_sec {pub: in};
    var v_Ca_i_NCX: fmol_per_sec {pub: in};
    var v_Na_o_NCX: fmol_per_sec {pub: in};
    var v_Na_i_NCX: fmol_per_sec {pub: in};
    var I_mem_NCX: fA {pub: in};
    // pCa imports
    var v_pCa_R1: fmol_per_sec {pub: in};
    var v_pCa_R2: fmol_per_sec {pub: in};
    var I_mem_pCa: fA {pub: in};
    // SERCA imports
    var v_Ca_i_SERCA: fmol_per_sec {pub: in};
    var v_Ca_SR_SERCA: fmol_per_sec {pub: in};
    var v_H_SERCA: fmol_per_sec {pub: in};
    var v_MgADP_SERCA: fmol_per_sec {pub: in};
    var v_MgATP_SERCA: fmol_per_sec {pub: in};
    var v_Pi_SERCA: fmol_per_sec {pub: in};
    // TCC imports
    var v_TCC: fmol_per_sec {pub: in};
    var I_mem_TCC: fA {pub: in};
    // TO imports
    var v_TO: fmol_per_sec {pub: in};
    var I_mem_TO: fA {pub: in};
    // TRPN_buffer imports
    var v_b1: fmol_per_sec {pub: in};
    ode(q_Ca_i, t) = -v_CaB+v_leak-v_b2+v_Ca_i_LCC+v_Ca_i_NCX-v_pCa_R1+v_Ca_i_SERCA-v_TCC-v_ns_Ca-v_b1;
    ode(q_Ca_SR, t) = -v_leak+v_Ca_SR_SERCA;
    ode(q_CMDN, t) = -v_b2;
    ode(q_CMDN_Ca, t) = v_b2;
    ode(q_Na_i, t) = -v_Na+v_Na_i_NaK-v_NaB+v_Na_i_NCX-v_ns_Na-v_funny_Na;
    ode(q_K_i, t) = -v_K-v_K1-v_Kp-v_Kr-v_Ks+v_K_i_LCC+v_K_i_NaK-v_TO-v_K_ATP-v_ns_K-v_funny_K;
    ode(q_MgATP, t) = v_MgATP_NaK+v_MgATP_SERCA;
    ode(q_MgADP, t) = v_MgADP_NaK+v_MgADP_SERCA;
    ode(q_Pi, t) = v_Pi_NaK+v_Pi_SERCA;
    ode(q_H, t) = v_H_NaK+v_H_SERCA;
    ode(q_pCa, t) = -v_pCa_R1+v_pCa_R2;
    ode(q_pCa_Ca, t) = v_pCa_R1-v_pCa_R2;
    ode(q_TRPN, t) = -v_b1;
    ode(q_TRPN_Ca, t) = v_b1;
    //
    ode(q_Ca_o, t) = 1{dimensionless}*(v_CaB+v_Ca_o_LCC+v_Ca_o_NCX+v_pCa_R2+v_TCC+v_ns_Ca);
    ode(q_Na_o, t) = 1{dimensionless}*(v_Na+v_Na_o_NaK+v_NaB+v_Na_o_NCX+v_ns_Na+v_funny_Na);
    ode(q_K_o, t) = 1{dimensionless}*(v_K+v_K1+v_Kp+v_Kr+v_Ks+v_K_o_LCC+v_K_o_NaK+v_TO+v_K_ATP+v_ns_K+v_funny_K);
    //
    ode(q_mem, t) = I_mem_CaB+I_mem_Na+I_mem_K+I_mem_K_ATP+I_mem_K1+I_mem_Kp+I_mem_Kr+I_mem_Ks+I_mem_LCC+I_mem_NaB+I_mem_NaK+I_mem_NCX+I_mem_ns_Ca+I_mem_pCa+I_mem_TCC+I_mem_TO+I_stim+I_mem_ns_Na+I_mem_ns_K+I_mem_funny;
  enddef;
  def map between environment and CaB for
    vars t and t;
    vars q_Ca_i and q_Ca_i;
    vars q_Ca_o and q_Ca_o;
    vars v_CaB and v_CaB;
    vars q_mem and q_mem;
    vars V_mem and V_mem;
    vars I_mem_CaB and I_mem_CaB;
  enddef;
  def map between environment and Ca_leak for
    vars t and t;
    vars q_Ca_SR and q_Ca_SR;
    vars q_Ca_i and q_Ca_i;
    vars v_leak and v_leak;
  enddef;
  def map between environment and CMDN_buffer for
    vars t and t;
    vars q_Ca_i and q_Ca_i;
    vars q_CMDN and q_CMDN;
    vars q_CMDN_Ca and q_CMDN_Ca;
    vars v_b2 and v_b2;
  enddef;
  def map between environment and fast_Na for
    vars t and t;
    vars C_m and C_m;
    vars q_Na_i and q_Na_i;
    vars q_Na_o and q_Na_o;
    vars q_000_Na and q_S000_Na;
    vars q_100_Na and q_S100_Na;
    vars q_200_Na and q_S200_Na;
    vars q_300_Na and q_S300_Na;
    vars q_010_Na and q_S010_Na;
    vars q_110_Na and q_S110_Na;
    vars q_210_Na and q_S210_Na;
    vars q_310_Na and q_S310_Na;
    vars q_001_Na and q_S001_Na;
    vars q_101_Na and q_S101_Na;
    vars q_201_Na and q_S201_Na;
    vars q_301_Na and q_S301_Na;
    vars q_011_Na and q_S011_Na;
    vars q_111_Na and q_S111_Na;
    vars q_211_Na and q_S211_Na;
    vars q_311_Na and q_S311_Na;
    vars v_Na and v_Na;
    vars q_mem and q_mem;
    vars I_mem_Na and I_mem_Na;
  enddef;
  def map between K and environment for
    vars t and t;
    vars C_m and C_m;
    vars q_K_o and q_K_o;
    vars q_K_i and q_K_i;
    vars q_S00_K and q_S00_K;
    vars q_S10_K and q_S10_K;
    vars q_S20_K and q_S20_K;
    vars q_S01_K and q_S01_K;
    vars q_S11_K and q_S11_K;
    vars q_S21_K and q_S21_K;
    vars v_K and v_K;
    vars q_mem and q_mem;
    vars I_mem_K and I_mem_K;
  enddef;
  def map between K_ATP and environment for
    vars t and t;
    vars C_m and C_m;
    vars q_K_o and q_K_o;
    vars q_K_i and q_K_i;
    vars v_K_ATP and v_K_ATP;
    vars q_mem and q_mem;
    vars I_mem_K_ATP and I_mem_K_ATP;
  enddef;
  def map between environment and K1 for
    vars t and t;
    vars C_m and C_m;
    vars q_K_i and q_K_i;
    vars q_K_o and q_K_o;
    vars q_C_K1 and q_C_K1;
    vars q_O_K1 and q_O_K1;
    vars v_K1 and v_K1;
    vars q_mem and q_mem;
    vars I_mem_K1 and I_mem_K1;
  enddef;
  def map between environment and Kp for
    vars t and t;
    vars C_m and C_m;
    vars q_K_i and q_K_i;
    vars q_K_o and q_K_o;
    vars q_C_Kp and q_C_Kp;
    vars q_O_Kp and q_O_Kp;
    vars v_Kp and v_Kp;
    vars q_mem and q_mem;
    vars I_mem_Kp and I_mem_Kp;
  enddef;
  def map between environment and Kr for
    vars t and t;
    vars C_m and C_m;
    vars q_K_i and q_K_i;
    vars q_K_o and q_K_o;
    vars q_Sa_Kr and q_Sa;
    vars q_Sb_Kr and q_Sb;
    vars q_Sc_Kr and q_Sc;
    vars q_Sd_Kr and q_Sd;
    vars v_Kr and v_Kr;
    vars q_mem and q_mem;
    vars I_mem_Kr and I_mem_Kr;
  enddef;
  def map between environment and Ks for
    vars t and t;
    vars C_m and C_m;
    vars q_K_i and q_K_i;
    vars q_K_o and q_K_o;
    vars q_S_Ks0 and q_S_Ks0;
    vars q_S_Ks1 and q_S_Ks1;
    vars q_S_Ks2 and q_S_Ks2;
    vars v_Ks and v_Ks;
    vars q_mem and q_mem;
    vars I_mem_Ks and I_mem_Ks;
  enddef;
  def map between environment and LCC for
    vars t and t;
    vars C_m and C_m;
    vars q_Ca_i and q_Ca_i;
    vars q_Ca_o and q_Ca_o;
    vars q_K_i and q_K_i;
    vars q_K_o and q_K_o;
    vars q_000_LCC and q_S000_LCC;
    vars q_010_LCC and q_S010_LCC;
    vars q_020_LCC and q_S020_LCC;
    vars q_100_LCC and q_S100_LCC;
    vars q_110_LCC and q_S110_LCC;
    vars q_120_LCC and q_S120_LCC;
    vars q_001_LCC and q_S001_LCC;
    vars q_011_LCC and q_S011_LCC;
    vars q_021_LCC and q_S021_LCC;
    vars q_101_LCC and q_S101_LCC;
    vars q_111_LCC and q_S111_LCC;
    vars q_121_LCC and q_S121_LCC;
    vars v_Ca_o_LCC and v_Ca_o_LCC;
    vars v_Ca_i_LCC and v_Ca_i_LCC;
    vars v_K_o_LCC and v_K_o_LCC;
    vars v_K_i_LCC and v_K_i_LCC;
    vars q_mem and q_mem;
    vars I_mem_LCC and I_mem_LCC;
  enddef;
  def map between environment and NaK for
    vars t and t;
    vars C_m and C_m;
    vars q_K_i and q_K_i;
    vars q_K_o and q_K_o;
    vars q_Na_i and q_Na_i;
    vars q_Na_o and q_Na_o;
    vars q_MgATP and q_MgATP;
    vars q_MgADP and q_MgADP;
    vars q_Pi and q_Pi;
    vars q_H and q_H;
    vars q_P7 and q_P7;
    vars q_P14 and q_P14;
    vars q_P15 and q_P15;
    vars q_P1 and q_P1;
    vars q_P2 and q_P2;
    vars q_P3 and q_P3;
    vars q_P4 and q_P4;
    vars q_P5 and q_P5;
    vars q_P6 and q_P6;
    vars q_P10 and q_P10;
    vars q_P11 and q_P11;
    vars q_P12 and q_P12;
    vars q_P13 and q_P13;
    vars q_P8 and q_P8;
    vars q_P9 and q_P9;
    vars v_K_o_NaK and v_K_o_NaK;
    vars v_K_i_NaK and v_K_i_NaK;
    vars v_Na_o_NaK and v_Na_o_NaK;
    vars v_Na_i_NaK and v_Na_i_NaK;
    vars v_H_NaK and v_H_NaK;
    vars v_MgADP_NaK and v_MgADP_NaK;
    vars v_MgATP_NaK and v_MgATP_NaK;
    vars v_Pi_NaK and v_Pi_NaK;
    vars q_mem and q_mem;
    vars I_mem_NaK and I_mem_NaK;
  enddef;
  def map between environment and NaB for
    vars t and t;
    vars q_Na_i and q_Na_i;
    vars q_Na_o and q_Na_o;
    vars v_NaB and v_NaB;
    vars q_mem and q_mem;
    vars V_mem and V_mem;
    vars I_mem_NaB and I_mem_NaB;
  enddef;
  def map between environment and NCX for
    vars t and t;
    vars C_m and C_m;
    vars q_Na_i and q_Na_i;
    vars q_Ca_i and q_Ca_i;
    vars q_Na_o and q_Na_o;
    vars q_Ca_o and q_Ca_o;
    vars q_P1_NCX and q_P1_NCX;
    vars q_P2_NCX and q_P2_NCX;
    vars q_P3_NCX and q_P3_NCX;
    vars q_P4_NCX and q_P4_NCX;
    vars q_P5_NCX and q_P5_NCX;
    vars q_P6_NCX and q_P6_NCX;
    vars v_Ca_o_NCX and v_Ca_o_NCX;
    vars v_Ca_i_NCX and v_Ca_i_NCX;
    vars v_Na_o_NCX and v_Na_o_NCX;
    vars v_Na_i_NCX and v_Na_i_NCX;
    vars q_mem and q_mem;
    vars I_mem_NCX and I_mem_NCX;
  enddef;
  def map between environment and ns for
    vars t and t;
    vars C_m and C_m;
    vars q_mem and q_mem;
    vars q_Ca_o and q_Ca_o;
    vars q_Ca_i and q_Ca_i;
    vars v_ns_Ca and v_ns_Ca;
    vars I_mem_ns_Ca and I_mem_ns_Ca;
    vars q_Na_o and q_Na_o;
    vars q_Na_i and q_Na_i;
    vars v_ns_Na and v_ns_Na;
    vars I_mem_ns_Na and I_mem_ns_Na;
    vars q_K_o and q_K_o;
    vars q_K_i and q_K_i;
    vars v_ns_K and v_ns_K;
    vars I_mem_ns_K and I_mem_ns_K;
  enddef;
  def map between environment and pCa for
    vars t and t;
    vars q_Ca_i and q_Ca_i;
    vars q_Ca_o and q_Ca_o;
    vars q_pCa and q_pCa;
    vars q_pCa_Ca and q_pCa_Ca;
    vars v_pCa_R1 and v_pCa_R1;
    vars v_pCa_R2 and v_pCa_R2;
    vars I_mem_pCa and I_mem_pCa;
  enddef;
  def map between environment and SERCA for
    vars t and t;
    vars q_H and q_H;
    vars q_Ca_i and q_Ca_i;
    vars q_Ca_SR and q_Ca_SR;
    vars q_MgATP and q_MgATP;
    vars q_MgADP and q_MgADP;
    vars q_Pi and q_Pi;
    vars v_Ca_i_SERCA and v_Ca_i_SERCA;
    vars v_Ca_SR_SERCA and v_Ca_SR_SERCA;
    vars v_H_SERCA and v_H_SERCA;
    vars v_MgADP_SERCA and v_MgADP_SERCA;
    vars v_MgATP_SERCA and v_MgATP_SERCA;
    vars v_Pi_SERCA and v_Pi_SERCA;
    vars q_P1_SERCA and q_P1_SERCA;
    vars q_P2_SERCA and q_P2_SERCA;
    vars q_P2a_SERCA and q_P2a_SERCA;
    vars q_P4_SERCA and q_P4_SERCA;
    vars q_P5_SERCA and q_P5_SERCA;
    vars q_P6_SERCA and q_P6_SERCA;
    vars q_P8_SERCA and q_P8_SERCA;
    vars q_P9_SERCA and q_P9_SERCA;
    vars q_P10_SERCA and q_P10_SERCA;
  enddef;
  def map between environment and TCC for
    vars t and t;
    vars C_m and C_m;
    vars q_Ca_i and q_Ca_i;
    vars q_Ca_o and q_Ca_o;
    vars q_S00_TCC and q_s00_TCC;
    vars q_S10_TCC and q_s10_TCC;
    vars q_S01_TCC and q_s01_TCC;
    vars q_S11_TCC and q_s11_TCC;
    vars v_TCC and v_TCC;
    vars q_mem and q_mem;
    vars I_mem_TCC and I_mem_TCC;
  enddef;
  def map between environment and TO for
    vars t and t;
    vars C_m and C_m;
    vars q_K_i and q_K_i;
    vars q_K_o and q_K_o;
    vars q_r0s0_TO and q_r0s0_TO;
    vars q_r1s0_TO and q_r1s0_TO;
    vars q_r0s1_TO and q_r0s1_TO;
    vars q_r1s1_TO and q_r1s1_TO;
    vars v_TO and v_TO;
    vars q_mem and q_mem;
    vars I_mem_TO and I_mem_TO;
  enddef;
  def map between environment and TRPN_buffer for
    vars t and t;
    vars q_Ca_i and q_Ca_i;
    vars q_TRPN and q_TRPN;
    vars q_TRPN_Ca and q_TRPN_Ca;
    vars v_b1 and v_b1;
  enddef;
  def map between BG_parameters and CaB for
    vars kappa_CaB and kappa_CaB;
    vars K_Ca_i and K_Ca_i;
    vars K_Ca_o and K_Ca_o;
    vars zCa and zCa;
  enddef;
  def map between BG_parameters and Ca_leak for
    vars kappa_leak and kappa_leak;
    vars K_Ca_SR and K_Ca_SR;
    vars K_Ca_i and K_Ca_i;
  enddef;
  def map between BG_parameters and fast_Na for
    vars kappa_Na and kappa_Na;
    vars kappa_m000 and kappa_m000;
    vars kappa_m001 and kappa_m001;
    vars kappa_m010 and kappa_m010;
    vars kappa_m011 and kappa_m011;
    vars kappa_m100 and kappa_m100;
    vars kappa_m101 and kappa_m101;
    vars kappa_m110 and kappa_m110;
    vars kappa_m111 and kappa_m111;
    vars kappa_m200 and kappa_m200;
    vars kappa_m201 and kappa_m201;
    vars kappa_m210 and kappa_m210;
    vars kappa_m211 and kappa_m211;
    vars kappa_h000 and kappa_h000;
    vars kappa_h001 and kappa_h001;
    vars kappa_h100 and kappa_h100;
    vars kappa_h101 and kappa_h101;
    vars kappa_h200 and kappa_h200;
    vars kappa_h201 and kappa_h201;
    vars kappa_h300 and kappa_h300;
    vars kappa_h301 and kappa_h301;
    vars kappa_j000 and kappa_j000;
    vars kappa_j010 and kappa_j010;
    vars kappa_j100 and kappa_j100;
    vars kappa_j110 and kappa_j110;
    vars kappa_j200 and kappa_j200;
    vars kappa_j210 and kappa_j210;
    vars kappa_j300 and kappa_j300;
    vars kappa_j310 and kappa_j310;
    vars K_Na_i and K_Na_i;
    vars K_Na_o and K_Na_o;
    vars K_000_Na and K_000_Na;
    vars K_100_Na and K_100_Na;
    vars K_200_Na and K_200_Na;
    vars K_300_Na and K_300_Na;
    vars K_010_Na and K_010_Na;
    vars K_110_Na and K_110_Na;
    vars K_210_Na and K_210_Na;
    vars K_310_Na and K_310_Na;
    vars K_001_Na and K_001_Na;
    vars K_101_Na and K_101_Na;
    vars K_201_Na and K_201_Na;
    vars K_301_Na and K_301_Na;
    vars K_011_Na and K_011_Na;
    vars K_111_Na and K_111_Na;
    vars K_211_Na and K_211_Na;
    vars K_311_Na and K_311_Na;
    vars zNa and zNa;
    vars z_fh and z_fh;
    vars z_fj and z_fj;
    vars z_fm and z_fm;
    vars z_rh and z_rh;
    vars z_rj and z_rj;
    vars z_rm and z_rm;
  enddef;
  def map between K and BG_parameters for
    vars K_S00_K and K_S00_K;
    vars K_S01_K and K_S01_K;
    vars K_S10_K and K_S10_K;
    vars K_S11_K and K_S11_K;
    vars K_S20_K and K_S20_K;
    vars K_S21_K and K_S21_K;
    vars K_K_o and K_K_o;
    vars K_K_i and K_K_i;
    vars kappa_K and kappa_K;
    vars kappa_X00_K and kappa_X00_K;
    vars kappa_X01_K and kappa_X01_K;
    vars kappa_X10_K and kappa_X10_K;
    vars kappa_X11_K and kappa_X11_K;
    vars kappa_i00_K and kappa_i00_K;
    vars kappa_i10_K and kappa_i10_K;
    vars kappa_i20_K and kappa_i20_K;
    vars nK and nK;
    vars zK and zK;
    vars z_fX and z_fX;
    vars z_fXi and z_fXi;
    vars z_rX and z_rX;
    vars z_rXi and z_rXi;
  enddef;
  def map between BG_parameters and K1 for
    vars kappa_K1 and kappa_K1;
    vars kappa_gK1 and kappa_gK1;
    vars K_K_i and K_K_i;
    vars K_K_o and K_K_o;
    vars K_C_K1 and K_C_K1;
    vars K_O_K1 and K_O_K1;
    vars z_fK1 and z_fK1;
    vars z_rK1 and z_rK1;
    vars nK and nK;
    vars zK and zK;
  enddef;
  def map between K_ATP and BG_parameters for
    vars K_K_o and K_K_o;
    vars K_K_i and K_K_i;
    vars kappa_K_ATP and kappa_K_ATP;
    vars zK and zK;
  enddef;
  def map between BG_parameters and Kp for
    vars kappa_Kp and kappa_Kp;
    vars kappa_gKp and kappa_gKp;
    vars K_K_i and K_K_i;
    vars K_K_o and K_K_o;
    vars K_C_Kp and K_C_Kp;
    vars K_O_Kp and K_O_Kp;
    vars zK and zK;
    vars z_f_Kp and z_f_Kp;
    vars z_r_Kp and z_r_Kp;
  enddef;
  def map between BG_parameters and Kr for
    vars kappa_Kr and kappa_Kr;
    vars K_K_o and K_K_o;
    vars K_K_i and K_K_i;
    vars kappa_xr10 and kappa_xr10;
    vars kappa_xr11 and kappa_xr11;
    vars kappa_xr20 and kappa_xr20;
    vars kappa_xr21 and kappa_xr21;
    vars K_Sa_Kr and K_Sa_Kr;
    vars K_Sb_Kr and K_Sb_Kr;
    vars K_Sc_Kr and K_Sc_Kr;
    vars K_Sd_Kr and K_Sd_Kr;
    vars z_xr1_f and z_xr1_f;
    vars z_xr1_r and z_xr1_r;
    vars z_xr2_f and z_xr2_f;
    vars z_xr2_r and z_xr2_r;
    vars zK and zK;
  enddef;
  def map between BG_parameters and Ks for
    vars kappa_Ks and kappa_Ks;
    vars K_K_o and K_K_o;
    vars K_K_i and K_K_i;
    vars kappa_xs1 and kappa_xs1;
    vars kappa_xs2 and kappa_xs2;
    vars K_S_Ks0 and K_S_Ks0;
    vars K_S_Ks1 and K_S_Ks1;
    vars K_S_Ks2 and K_S_Ks2;
    vars z_xs_f and z_xs_f;
    vars z_xs_r and z_xs_r;
    vars zK and zK;
  enddef;
  def map between BG_parameters and LCC for
    vars kappa_LCC_Ca1 and kappa_LCC_Ca1;
    vars kappa_LCC_Ca2 and kappa_LCC_Ca2;
    vars kappa_LCC_K1 and kappa_LCC_K1;
    vars kappa_LCC_K2 and kappa_LCC_K2;
    vars kappa_d000 and kappa_d000;
    vars kappa_d010 and kappa_d010;
    vars kappa_d020 and kappa_d020;
    vars kappa_d001 and kappa_d001;
    vars kappa_d011 and kappa_d011;
    vars kappa_d021 and kappa_d021;
    vars kappa_f1_000 and kappa_f1_000;
    vars kappa_f1_100 and kappa_f1_100;
    vars kappa_f1_001 and kappa_f1_001;
    vars kappa_f1_101 and kappa_f1_101;
    vars kappa_f2_000 and kappa_f2_000;
    vars kappa_f2_100 and kappa_f2_100;
    vars kappa_f2_001 and kappa_f2_001;
    vars kappa_f2_101 and kappa_f2_101;
    vars kappa_f3_010 and kappa_f3_010;
    vars kappa_f3_110 and kappa_f3_110;
    vars kappa_f3_011 and kappa_f3_011;
    vars kappa_f3_111 and kappa_f3_111;
    vars kappa_fCa000 and kappa_fCa000;
    vars kappa_fCa100 and kappa_fCa100;
    vars kappa_fCa010 and kappa_fCa010;
    vars kappa_fCa110 and kappa_fCa110;
    vars kappa_fCa020 and kappa_fCa020;
    vars kappa_fCa120 and kappa_fCa120;
    vars K_Ca_i and K_Ca_i;
    vars K_Ca_o and K_Ca_o;
    vars K_K_i and K_K_i;
    vars K_K_o and K_K_o;
    vars K_000_LCC and K_000_LCC;
    vars K_010_LCC and K_010_LCC;
    vars K_020_LCC and K_020_LCC;
    vars K_100_LCC and K_100_LCC;
    vars K_110_LCC and K_110_LCC;
    vars K_120_LCC and K_120_LCC;
    vars K_001_LCC and K_001_LCC;
    vars K_011_LCC and K_011_LCC;
    vars K_021_LCC and K_021_LCC;
    vars K_101_LCC and K_101_LCC;
    vars K_111_LCC and K_111_LCC;
    vars K_121_LCC and K_121_LCC;
    vars z_rCa and z_rCa;
    vars z_fd and z_fd;
    vars z_ff1 and z_ff1;
    vars z_ff2 and z_ff2;
    vars z_ff3 and z_ff3;
    vars z_rd and z_rd;
    vars z_rf1 and z_rf1;
    vars z_rf2 and z_rf2;
    vars z_rf3 and z_rf3;
    vars zCa and zCa;
    vars zK and zK;
  enddef;
  def map between BG_parameters and NaK for
    vars kappa_1_NaK and kappa_1_NaK;
    vars kappa_2_NaK and kappa_2_NaK;
    vars kappa_3_NaK and kappa_3_NaK;
    vars kappa_4_NaK and kappa_4_NaK;
    vars kappa_5_NaK and kappa_5_NaK;
    vars kappa_6_NaK and kappa_6_NaK;
    vars kappa_7_NaK and kappa_7_NaK;
    vars kappa_8_NaK and kappa_8_NaK;
    vars kappa_9_NaK and kappa_9_NaK;
    vars kappa_10_NaK and kappa_10_NaK;
    vars kappa_11_NaK and kappa_11_NaK;
    vars kappa_12_NaK and kappa_12_NaK;
    vars kappa_13_NaK and kappa_13_NaK;
    vars kappa_14_NaK and kappa_14_NaK;
    vars kappa_15_NaK and kappa_15_NaK;
    vars K_1_NaK and K_1_NaK;
    vars K_2_NaK and K_2_NaK;
    vars K_3_NaK and K_3_NaK;
    vars K_4_NaK and K_4_NaK;
    vars K_5_NaK and K_5_NaK;
    vars K_6_NaK and K_6_NaK;
    vars K_7_NaK and K_7_NaK;
    vars K_8_NaK and K_8_NaK;
    vars K_9_NaK and K_9_NaK;
    vars K_10_NaK and K_10_NaK;
    vars K_11_NaK and K_11_NaK;
    vars K_12_NaK and K_12_NaK;
    vars K_13_NaK and K_13_NaK;
    vars K_14_NaK and K_14_NaK;
    vars K_15_NaK and K_15_NaK;
    vars K_K_i and K_K_i;
    vars K_K_o and K_K_o;
    vars K_Na_i and K_Na_i;
    vars K_Na_o and K_Na_o;
    vars K_MgATP and K_MgATP;
    vars K_MgADP and K_MgADP;
    vars K_Pi and K_Pi;
    vars K_H and K_H;
    vars zF_5 and zF_5;
    vars zF_8 and zF_8;
  enddef;
  def map between BG_parameters and NaB for
    vars kappa_NaB and kappa_NaB;
    vars K_Na_i and K_Na_i;
    vars K_Na_o and K_Na_o;
    vars zNa and zNa;
  enddef;
  def map between BG_parameters and NCX for
    vars kappa_1_NCX and kappa_1_NCX;
    vars kappa_2_NCX and kappa_2_NCX;
    vars kappa_3_NCX and kappa_3_NCX;
    vars kappa_4_NCX and kappa_4_NCX;
    vars kappa_5_NCX and kappa_5_NCX;
    vars kappa_6_NCX and kappa_6_NCX;
    vars K_1_NCX and K_1_NCX;
    vars K_2_NCX and K_2_NCX;
    vars K_3_NCX and K_3_NCX;
    vars K_4_NCX and K_4_NCX;
    vars K_5_NCX and K_5_NCX;
    vars K_6_NCX and K_6_NCX;
    vars K_Na_i and K_Na_i;
    vars K_Ca_i and K_Ca_i;
    vars K_Na_o and K_Na_o;
    vars K_Ca_o and K_Ca_o;
    vars nNa_o_NCX and nNa_o_NCX;
    vars nNa_i_NCX and nNa_i_NCX;
    vars zf_NCX and zf_NCX;
    vars zr_NCX and zr_NCX;
  enddef;
  def map between ns and BG_parameters for
    vars K_Ca_o and K_Ca_o;
    vars K_Ca_i and K_Ca_i;
    vars K_Na_o and K_Na_o;
    vars K_Na_i and K_Na_i;
    vars K_K_o and K_K_o;
    vars K_K_i and K_K_i;
    vars kappa_ns_Ca and kappa_ns_Ca;
    vars kappa_ns_Na and kappa_ns_Na;
    vars kappa_ns_K and kappa_ns_K;
    vars zCa and zCa;
    vars zNa and zNa;
    vars zK and zK;
  enddef;
  def map between BG_parameters and pCa for
    vars kappa_pCa_R1 and kappa_pCa_R1;
    vars kappa_pCa_R2 and kappa_pCa_R2;
    vars K_Ca_i and K_Ca_i;
    vars K_Ca_o and K_Ca_o;
    vars K_pCa and K_pCa;
    vars K_pCa_Ca and K_pCa_Ca;
    vars zCa and zCa;
  enddef;
  def map between BG_parameters and SERCA for
    vars kappa_SERCA_R1_2 and kappa_SERCA_R1_2;
    vars kappa_SERCA_R2_4 and kappa_SERCA_R2_4;
    vars kappa_SERCA_R2_2a and kappa_SERCA_R2_2a;
    vars kappa_SERCA_R4_5 and kappa_SERCA_R4_5;
    vars kappa_SERCA_R5_6 and kappa_SERCA_R5_6;
    vars kappa_SERCA_R6_8 and kappa_SERCA_R6_8;
    vars kappa_SERCA_R8_9 and kappa_SERCA_R8_9;
    vars kappa_SERCA_R9_10 and kappa_SERCA_R9_10;
    vars kappa_SERCA_R10_1 and kappa_SERCA_R10_1;
    vars K_P1_SERCA and K_P1_SERCA;
    vars K_P2_SERCA and K_P2_SERCA;
    vars K_P2a_SERCA and K_P2a_SERCA;
    vars K_P4_SERCA and K_P4_SERCA;
    vars K_P5_SERCA and K_P5_SERCA;
    vars K_P6_SERCA and K_P6_SERCA;
    vars K_P8_SERCA and K_P8_SERCA;
    vars K_P9_SERCA and K_P9_SERCA;
    vars K_P10_SERCA and K_P10_SERCA;
    vars K_H and K_H;
    vars K_Ca_i and K_Ca_i;
    vars K_Ca_SR and K_Ca_SR;
    vars K_MgATP and K_MgATP;
    vars K_MgADP and K_MgADP;
    vars K_Pi and K_Pi;
  enddef;
  def map between BG_parameters and TCC for
    vars kappa_TCC and kappa_TCC;
    vars kappa_R1_TCC and kappa_R1_TCC;
    vars kappa_R2_TCC and kappa_R2_TCC;
    vars kappa_R3_TCC and kappa_R3_TCC;
    vars kappa_R4_TCC and kappa_R4_TCC;
    vars K_Ca_i and K_Ca_i;
    vars K_Ca_o and K_Ca_o;
    vars K_S00_TCC and K_S00_TCC;
    vars K_S10_TCC and K_S10_TCC;
    vars K_S01_TCC and K_S01_TCC;
    vars K_S11_TCC and K_S11_TCC;
    vars z_df and z_df;
    vars z_ff and z_ff;
    vars z_dr and z_dr;
    vars z_fr and z_fr;
    vars zCa and zCa;
  enddef;
  def map between BG_parameters and TO for
    vars kappa_TO and kappa_TO;
    vars kappa_gTO_1 and kappa_gTO_1;
    vars kappa_gTO_2 and kappa_gTO_2;
    vars kappa_gTO_3 and kappa_gTO_3;
    vars kappa_gTO_4 and kappa_gTO_4;
    vars K_K_i and K_K_i;
    vars K_K_o and K_K_o;
    vars K_r0s0_TO and K_r0s0_TO;
    vars K_r1s0_TO and K_r1s0_TO;
    vars K_r0s1_TO and K_r0s1_TO;
    vars K_r1s1_TO and K_r1s1_TO;
    vars z_rTO_f and z_rTO_f;
    vars z_sTO_f and z_sTO_f;
    vars z_rTO_r and z_rTO_r;
    vars z_sTO_r and z_sTO_r;
    vars zK and zK;
  enddef;
  def map between environment and funny for
    vars t and t;
    vars q_K_i and q_K_i;
    vars q_K_o and q_K_o;
    vars q_Na_i and q_Na_i;
    vars q_Na_o and q_Na_o;
    vars q_x0_funny and q_x0_funny;
    vars q_x1_funny and q_x1_funny;
    vars q_mem and q_mem;
    vars C_m and C_m;
    vars v_funny_K and v_funny_K;
    vars v_funny_Na and v_funny_Na;
    vars I_mem_funny and I_mem_funny;
  enddef;
  def map between funny and BG_parameters for
    vars kappa_funny_Na and kappa_funny_Na;
    vars kappa_funny_K and kappa_funny_K;
    vars kappa_R_xf and kappa_R_xf;
    vars K_Na_i and K_Na_i;
    vars K_Na_o and K_Na_o;
    vars K_K_i and K_K_i;
    vars K_K_o and K_K_o;
    vars K_x0_funny and K_x0_funny;
    vars K_x1_funny and K_x1_funny;
    vars z_xff and z_xff;
    vars z_xfr and z_xfr;
    vars zNa and zNa;
    vars zK and zK;
  enddef;
  def map between BG_parameters and TRPN_buffer for
    vars kappa_b1 and kappa_b1;
    vars K_Ca_i and K_Ca_i;
    vars K_TRPN and K_TRPN;
    vars K_TRPN_Ca and K_TRPN_Ca;
  enddef;
  def map between BG_parameters and CMDN_buffer for
    vars kappa_b2 and kappa_b2;
    vars K_Ca_i and K_Ca_i;
    vars K_CMDN and K_CMDN;
    vars K_CMDN_Ca and K_CMDN_Ca;
  enddef;
  def map between constants and CaB for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and Ca_leak for
    vars R and R;
    vars T and T;
  enddef;
  def map between constants and CMDN_buffer for
    vars R and R;
    vars T and T;
  enddef;
  def map between constants and TRPN_buffer for
    vars R and R;
    vars T and T;
  enddef;
  def map between constants and fast_Na for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and funny for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and K for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and K_ATP for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and K1 for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and Kp for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and Kr for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and Ks for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and LCC for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and NaK for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and NaB for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and NCX for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and ns for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and pCa for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and SERCA for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and TCC for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and TO for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
enddef;
