def model FCU_EC_coupling as
  def import using "units_and_constants/units_BG.cellml" for
    unit mM using unit mM;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit J_per_mol using unit J_per_mol;
    unit fmol_per_sec using unit fmol_per_sec;
    unit C_per_mol using unit C_per_mol;
    unit J_per_C using unit J_per_C;
    unit microm3 using unit microm3;
    unit fF using unit fF;
    unit fC using unit fC;
    unit fA using unit fA;
    unit per_second using unit per_second;
    unit millivolt using unit millivolt;
    unit per_sec using unit per_sec;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit fmol_per_L using unit fmol_per_L;
    unit fmol_per_L_per_sec using unit fmol_per_L_per_sec;
    unit per_sec_per_fmol_per_L using unit per_sec_per_fmol_per_L;
    unit uM using unit uM;
    unit mM_per_sec using unit mM_per_sec;
    unit uM_per_sec using unit uM_per_sec;
    unit pL using unit pL;
    unit m_to_u using unit m_to_u;
  enddef;
  def import using "units_and_constants/constants_BG.cellml" for
    comp constants using comp constants;
  enddef;
  def import using "units_and_constants/ion_valency.cellml" for
    comp ion_valences using comp ion_valences;
  enddef;
  def import using "Ca_leak/BG_Ca_leak.cellml" for
    comp Ca_leak using comp Ca_leak;
  enddef;
  def import using "crossbridge_TRPN/BG_crossbridge_TRPN.cellml" for
    comp crossbridge_TRPN using comp crossbridge_TRPN;
  enddef;
  def import using "diadCaDiffusion/BG_diadCaDiffusion.cellml" for
    comp diadCaDiffusion using comp diadCaDiffusion;
  enddef;
  def import using "LCC_diadic/BG_LCC_diadic.cellml" for
    comp LCC_diadic using comp LCC;
  enddef;
  def import using "NCX/BG_NCX.cellml" for
    comp NCX using comp NCX;
  enddef;
  def import using "pCa/BG_pCa.cellml" for
    comp pCa using comp pCa;
  enddef;
  def import using "PLB/BG_PLB.cellml" for
    comp PLB using comp PLB;
  enddef;
  def import using "RyR/BG_RyR.cellml" for
    comp RyR using comp RyR;
  enddef;
  def import using "SERCA/BG_SERCA.cellml" for
    comp SERCA using comp SERCA;
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;

  def comp BG_parameters as
    var kappa_leak: fmol_per_sec {init: 1.19278e-07, pub: out};
    var kappa_R_TRPNCa: fmol_per_sec {init: 61.975, pub: out};
    var kappa_R_BU: fmol_per_sec {init: 6.70563, pub: out};
    var kappa_R_UW: fmol_per_sec {init: 0.295103, pub: out};
    var kappa_R_WS: fmol_per_sec {init: 0.00694361, pub: out};
    var kappa_R_SU: fmol_per_sec {init: 124985, pub: out};
    var kappa_diadDf: fmol_per_sec {init: 0.0319966, pub: out};
    var kappa_LCC_Ca1: fmol_per_sec {init: 1.45746, pub: out};
    var kappa_LCC_Ca2: fmol_per_sec {init: 1.91895, pub: out};
    var kappa_d000: fmol_per_sec {init: 306.532, pub: out};
    var kappa_d010: fmol_per_sec {init: 15.4798, pub: out};
    var kappa_d020: fmol_per_sec {init: 20.3814, pub: out};
    var kappa_d001: fmol_per_sec {init: 0.0998404, pub: out};
    var kappa_d011: fmol_per_sec {init: 0.00504193, pub: out};
    var kappa_d021: fmol_per_sec {init: 0.00663841, pub: out};
    var kappa_f1_000: fmol_per_sec {init: 29.5266, pub: out};
    var kappa_f1_100: fmol_per_sec {init: 146.621, pub: out};
    var kappa_f1_001: fmol_per_sec {init: 0.00961708, pub: out};
    var kappa_f1_101: fmol_per_sec {init: 0.047756, pub: out};
    var kappa_f2_000: fmol_per_sec {init: 1.91912, pub: out};
    var kappa_f2_100: fmol_per_sec {init: 9.52987, pub: out};
    var kappa_f2_001: fmol_per_sec {init: 0.000625075, pub: out};
    var kappa_f2_101: fmol_per_sec {init: 0.00310397, pub: out};
    var kappa_f3_010: fmol_per_sec {init: 4187.14, pub: out};
    var kappa_f3_110: fmol_per_sec {init: 20792.3, pub: out};
    var kappa_f3_011: fmol_per_sec {init: 1.36379, pub: out};
    var kappa_f3_111: fmol_per_sec {init: 6.77224, pub: out};
    var kappa_fCa000: fmol_per_sec {init: 34185.2, pub: out};
    var kappa_fCa100: fmol_per_sec {init: 169755, pub: out};
    var kappa_fCa010: fmol_per_sec {init: 1726.35, pub: out};
    var kappa_fCa110: fmol_per_sec {init: 8572.61, pub: out};
    var kappa_fCa020: fmol_per_sec {init: 2272.98, pub: out};
    var kappa_fCa120: fmol_per_sec {init: 11287.1, pub: out};
    var kappa_1_NCX: fmol_per_sec {init: 429216, pub: out};
    var kappa_2_NCX: fmol_per_sec {init: 1.06923e+08, pub: out};
    var kappa_3_NCX: fmol_per_sec {init: 3622.96, pub: out};
    var kappa_4_NCX: fmol_per_sec {init: 1.06923e+08, pub: out};
    var kappa_5_NCX: fmol_per_sec {init: 429216, pub: out};
    var kappa_6_NCX: fmol_per_sec {init: 0.380974, pub: out};
    var kappa_pCa_R1: fmol_per_sec {init: 10726.4, pub: out};
    var kappa_pCa_R2: fmol_per_sec {init: 1.40741e-05, pub: out};
    var kappa_PLBph1: fmol_per_sec {init: 12.9276, pub: out};
    var kappa_PLBph2: fmol_per_sec {init: 1.86249, pub: out};
    var kappa_PLBd1: fmol_per_sec {init: 0.0640148, pub: out};
    var kappa_PLBd2: fmol_per_sec {init: 0.200763, pub: out};
    var kappa_Inh: fmol_per_sec {init: 1269.27, pub: out};
    var kappa_RyR: fmol_per_sec {init: 1.13157e+06, pub: out};
    var kappa_OC: fmol_per_sec {init: 8.50173, pub: out};
    var kappa_CCI: fmol_per_sec {init: 0.164843, pub: out};
    var kappa_CII: fmol_per_sec {init: 626.393, pub: out};
    var kappa_IO: fmol_per_sec {init: 52.1994, pub: out};
    var kappa_SERCA_R1_2: fmol_per_sec {init: 3.59662e-07, pub: out};
    var kappa_SERCA_R2_4: fmol_per_sec {init: 6.73317, pub: out};
    var kappa_SERCA_R2_2a: fmol_per_sec {init: 32063.4, pub: out};
    var kappa_SERCA_R4_5: fmol_per_sec {init: 6.73317, pub: out};
    var kappa_SERCA_R5_6: fmol_per_sec {init: 0.408566, pub: out};
    var kappa_SERCA_R6_8: fmol_per_sec {init: 313.54, pub: out};
    var kappa_SERCA_R8_9: fmol_per_sec {init: 6675, pub: out};
    var kappa_SERCA_R9_10: fmol_per_sec {init: 6675, pub: out};
    var kappa_SERCA_R10_1: fmol_per_sec {init: 5.05704e-06, pub: out};
    var K_Ca_SR: per_fmol {init: 4.69975, pub: out};
    var K_Ca_i: per_fmol {init: 1.11404, pub: out};
    var K_TRPN: per_fmol {init: 12.0566, pub: out};
    var K_Ca_TRPN: per_fmol {init: 0.062444, pub: out};
    var K_B_XB: per_fmol {init: 9.09233, pub: out};
    var K_U_XB: per_fmol {init: 3.40963, pub: out};
    var K_W_XB: per_fmol {init: 22.2937, pub: out};
    var K_S_XB: per_fmol {init: 5.57343e-06, pub: out};
    var K_Ca_D: per_fmol {init: 66.2656, pub: out};
    var K_Ca_o: per_fmol {init: 0.0265011, pub: out};
    var K_000_LCC: per_fmol {init: 1.58796, pub: out};
    var K_010_LCC: per_fmol {init: 31.4449, pub: out};
    var K_020_LCC: per_fmol {init: 23.8827, pub: out};
    var K_100_LCC: per_fmol {init: 0.319783, pub: out};
    var K_110_LCC: per_fmol {init: 6.33236, pub: out};
    var K_120_LCC: per_fmol {init: 4.80948, pub: out};
    var K_001_LCC: per_fmol {init: 4875.4, pub: out};
    var K_011_LCC: per_fmol {init: 96542.9, pub: out};
    var K_021_LCC: per_fmol {init: 73325.1, pub: out};
    var K_101_LCC: per_fmol {init: 981.805, pub: out};
    var K_111_LCC: per_fmol {init: 19441.8, pub: out};
    var K_121_LCC: per_fmol {init: 14766.2, pub: out};
    var K_1_NCX: per_fmol {init: 2.85254e+08, pub: out};
    var K_2_NCX: per_fmol {init: 16.9249, pub: out};
    var K_3_NCX: per_fmol {init: 34379.9, pub: out};
    var K_4_NCX: per_fmol {init: 313010, pub: out};
    var K_5_NCX: per_fmol {init: 6.01862e+07, pub: out};
    var K_6_NCX: per_fmol {init: 929.686, pub: out};
    var K_Na_i: per_fmol {init: 0.012842, pub: out};
    var K_Na_o: per_fmol {init: 0.0107799, pub: out};
    var K_pCa: per_fmol {init: 0.0126813, pub: out};
    var K_pCa_Ca: per_fmol {init: 0.0178289, pub: out};
    var K_PLB: per_fmol {init: 0.482706, pub: out};
    var K_PKACI: per_fmol {init: 0.0120458, pub: out};
    var K_PLB_PKACI: per_fmol {init: 2.99358, pub: out};
    var K_PP1: per_fmol {init: 0.0189254, pub: out};
    var K_PLBp_PP1: per_fmol {init: 1.63848, pub: out};
    var K_PLBp: per_fmol {init: 66.755, pub: out};
    var K_Ip: per_fmol {init: 62.347, pub: out};
    var K_Ip_PP1: per_fmol {init: 0.0304897, pub: out};
    var K_C_RyR: per_fmol {init: 2234.81, pub: out};
    var K_CI_RyR: per_fmol {init: 30.332, pub: out};
    var K_I_RyR: per_fmol {init: 0.0957866, pub: out};
    var K_O_RyR: per_fmol {init: 7.05739, pub: out};
    var K_P1_SERCA: per_fmol {init: 62.115, pub: out};
    var K_P2_SERCA: per_fmol {init: 1.88391, pub: out};
    var K_P2a_SERCA: per_fmol {init: 0.271481, pub: out};
    var K_P4_SERCA: per_fmol {init: 1292.79, pub: out};
    var K_P5_SERCA: per_fmol {init: 0.00208939, pub: out};
    var K_P6_SERCA: per_fmol {init: 139.3, pub: out};
    var K_P8_SERCA: per_fmol {init: 0.710561, pub: out};
    var K_P9_SERCA: per_fmol {init: 1.30406, pub: out};
    var K_P10_SERCA: per_fmol {init: 1.3624, pub: out};
    var K_H: per_fmol {init: 486.59, pub: out};
    var K_MgATP: per_fmol {init: 15.0787, pub: out};
    var K_MgADP: per_fmol {init: 1.53572e-05, pub: out};
    var K_Pi: per_fmol {init: 0.00616948, pub: out};
    var z_rCa: dimensionless {init: 2, pub: out};
    var z_fd: dimensionless {init: 2.1404, pub: out};
    var z_ff1: dimensionless {init: -1.1495, pub: out};
    var z_ff2: dimensionless {init: 0.72162, pub: out};
    var z_ff3: dimensionless {init: 4.2933, pub: out};
    var z_rd: dimensionless {init: -2.1404, pub: out};
    var z_rf1: dimensionless {init: 1.8993, pub: out};
    var z_rf2: dimensionless {init: -0.52288, pub: out};
    var z_rf3: dimensionless {init: 0, pub: out};
    var nNa_o_NCX: dimensionless {init: 3, pub: out};
    var nNa_i_NCX: dimensionless {init: 3, pub: out};
    var zf_NCX: dimensionless {init: -0.55679, pub: out};
    var zr_NCX: dimensionless {init: 0.44321, pub: out};
    var n_Tm: dimensionless {init: 1.1, pub: out};
    var n_CaTRPN: dimensionless {init: 2, pub: out};
  enddef;

  def comp environment as
    var time: second {pub: out};
    var vol_myo: pL {init: 25.84, pub: out};
    var C_m: fF {init: 153400, pub: out};
    // var F: C_per_mol {pub: in};
    var n_CaTRPN: dimensionless {pub: in};
    var q_membrane: fC {init: -13039, pub: out};
    var q_Ca_D: fmol {init: 3.68876E-07, pub: out};
    var q_TRPN: fmol {init: 2.57, pub: out};
    var q_Ca_TRPN: fmol {init: 1e-18, pub: out};
    var q_Ca_i: fmol {init: 0.005663912, pub: out};
    var q_Na_i: fmol {init: 481.46, pub: out};
    var q_Na_o: fmol {init: 725.48, pub: out};
    var q_B_XB: fmol {init: 1, pub: out};
    var q_U_XB: fmol {init: 0, pub: out};
    var q_W_XB: fmol {init: 0, pub: out};
    var q_S_XB: fmol {init: 0, pub: out};
    var q_Ca_o: fmol {init: 6.84, pub: out};
    var q_PLB: fmol {init: 4.028E+00, pub: out};
    var q_PKACI: fmol {init: 2.234E-03, pub: out};
    var q_PLB_PKACI: fmol {init: 1e-18, pub: out};
    var q_PP1: fmol {init: 3.382E-02, pub: out};
    var q_PLBp_PP1: fmol {init: 1e-18, pub: out};
    var q_PLBp: fmol {init: 1e-18, pub: out};
    var q_PLBp_baseline: fmol {init: 1e-18, pub: out};
    var q_Ip: fmol {init: 1.999E-03, pub: out};
    var q_Ip_PP1: fmol {init: 1e-18, pub: out};
    var q_Ca_SR: fmol {init: 0.641, pub: out};
    var q_pCa: fmol {init: 0.0032, pub: out};
    var q_pCa_Ca: fmol {init: 1e-9, pub: out};
    var q_H: fmol {init: 2.584e-6, pub: out};
    var q_Pi: fmol {init: 570, pub: out};
    var q_MgADP: fmol {init: 1.3794, pub: out};
    var q_MgATP: fmol {init: 3.8, pub: out};
    // gate species
    var q_000_LCC: fmol {init: 1.3798e-05, pub: out};
    var q_010_LCC: fmol {init: 1.3798e-05, pub: out};
    var q_020_LCC: fmol {init: 1.3798e-05, pub: out};
    var q_100_LCC: fmol {init: 1.3798e-05, pub: out};
    var q_110_LCC: fmol {init: 1.3798e-05, pub: out};
    var q_120_LCC: fmol {init: 1.3798e-05, pub: out};
    var q_001_LCC: fmol {init: 1.3798e-05, pub: out};
    var q_011_LCC: fmol {init: 1.3798e-05, pub: out};
    var q_021_LCC: fmol {init: 1.3798e-05, pub: out};
    var q_101_LCC: fmol {init: 1.3798e-05, pub: out};
    var q_111_LCC: fmol {init: 1.3798e-05, pub: out};
    var q_121_LCC: fmol {init: 1.3798e-05, pub: out};
    var q_P1_NCX: fmol {init: 4.24554e-07, pub: out};
    var q_P2_NCX: fmol {init: 4.24554e-07, pub: out};
    var q_P3_NCX: fmol {init: 4.24554e-07, pub: out};
    var q_P4_NCX: fmol {init: 4.24554e-07, pub: out};
    var q_P5_NCX: fmol {init: 4.24554e-07, pub: out};
    var q_P6_NCX: fmol {init: 4.24554e-07, pub: out};
    var q_C_RyR: fmol {init: 4.13941e-05, pub: out};
    var q_CI_RyR: fmol {init: 4.13941e-05, pub: out};
    var q_I_RyR: fmol {init: 4.13941e-05, pub: out};
    var q_O_RyR: fmol {init: 4.13941e-05, pub: out};
    var q_P1_SERCA: fmol {init: 2.83036e-08, pub: out};
    var q_P2_SERCA: fmol {init: 2.83036e-08, pub: out};
    var q_P2a_SERCA: fmol {init: 2.83036e-08, pub: out};
    var q_P4_SERCA: fmol {init: 2.83036e-08, pub: out};
    var q_P5_SERCA: fmol {init: 2.83036e-08, pub: out};
    var q_P6_SERCA: fmol {init: 2.83036e-08, pub: out};
    var q_P8_SERCA: fmol {init: 2.83036e-08, pub: out};
    var q_P9_SERCA: fmol {init: 2.83036e-08, pub: out};
    var q_P10_SERCA: fmol {init: 2.83036e-08, pub: out};
    // Ca_leak imports
    var v_leak: fmol_per_sec {pub: in};
    // crossbridge_TRPN imports
    var v_R_TRPNCa: fmol_per_sec {pub: in};
    var v_R_BU: fmol_per_sec {pub: in};
    var v_R_UW: fmol_per_sec {pub: in};
    var v_R_WS: fmol_per_sec {pub: in};
    var v_R_SU: fmol_per_sec {pub: in};
    var Tension: kPa {pub: in};
    var SL: metre {pub: in};
    // diadCaDiffusion imports
    var v_diadDf: fmol_per_sec {pub: in};
    // LCC_diadic imports
    var v_Ca_D_LCC: fmol_per_sec {pub: in};
    var v_Ca_o_LCC: fmol_per_sec {pub: in};
    var I_mem_LCC: fA {pub: in};
    // NCX imports
    var v_Ca_o_NCX: fmol_per_sec {pub: in};
    var v_Ca_i_NCX: fmol_per_sec {pub: in};
    var v_Na_o_NCX: fmol_per_sec {pub: in};
    var v_Na_i_NCX: fmol_per_sec {pub: in};
    var I_mem_NCX: fA {pub: in};
    // pCa imports
    var v_pCa_R1: fmol_per_sec {pub: in};
    var v_pCa_R2: fmol_per_sec {pub: in};
    var I_mem_pCa: fA {pub: in};
    // PLB imports
    var v_PLBph1: fmol_per_sec {pub: in};
    var v_PLBph2: fmol_per_sec {pub: in};
    var v_PLBd1: fmol_per_sec {pub: in};
    var v_PLBd2: fmol_per_sec {pub: in};
    var v_Inh: fmol_per_sec {pub: in};
    // RyR imports
    var v_RyR: fmol_per_sec {pub: in};
    var v_RyRgate_Ca_D: fmol_per_sec {pub: in};
    // SERCA imports
    var v_Ca_i_SERCA: fmol_per_sec {pub: in};
    var v_Ca_SR_SERCA: fmol_per_sec {pub: in};
    var v_H_SERCA: fmol_per_sec {pub: in};
    var v_MgADP_SERCA: fmol_per_sec {pub: in};
    var v_MgATP_SERCA: fmol_per_sec {pub: in};
    var v_Pi_SERCA: fmol_per_sec {pub: in};
    ode(q_Ca_SR, time) = -v_leak-v_RyR+v_Ca_SR_SERCA;
    ode(q_Ca_i, time) = -v_R_TRPNCa*n_CaTRPN+v_Ca_i_SERCA+v_leak+v_diadDf+v_Ca_i_NCX-v_pCa_R1+v_Ca_stim;
    ode(q_TRPN, time) = -v_R_TRPNCa;
    ode(q_Ca_TRPN, time) = v_R_TRPNCa;
    ode(q_B_XB, time) = -v_R_BU;
    ode(q_U_XB, time) = v_R_BU-v_R_UW+v_R_SU;
    ode(q_W_XB, time) = v_R_UW-v_R_WS;
    ode(q_S_XB, time) = v_R_WS-v_R_SU;
    ode(q_Ca_D, time) = -v_diadDf+v_Ca_D_LCC+v_RyR+v_RyRgate_Ca_D;
    ode(q_Ca_o, time) = v_Ca_o_LCC+v_Ca_o_NCX+v_pCa_R2;
    ode(q_Na_i, time) = v_Na_i_NCX;
    ode(q_Na_o, time) = v_Na_o_NCX;
    ode(q_pCa, time) = -v_pCa_R1+v_pCa_R2;
    ode(q_pCa_Ca, time) = v_pCa_R1-v_pCa_R2;
    ode(q_PLB, time) = v_PLBd2-v_PLBph1;
    ode(q_PKACI, time) = v_PLBph2-v_PLBph1;
    ode(q_PLB_PKACI, time) = v_PLBph1-v_PLBph2;
    ode(q_PP1, time) = v_PLBph1-v_PLBph2;
    ode(q_PLBp_PP1, time) = v_PLBd1-v_PLBd2;
    ode(q_PLBp, time) = v_PLBph2-v_PLBd1;
    ode(q_Ip, time) = -v_Inh;
    ode(q_Ip_PP1, time) = v_Inh;
    ode(q_H, time) = v_H_SERCA;
    ode(q_MgADP, time) = v_MgADP_SERCA;
    ode(q_MgATP, time) = v_MgATP_SERCA;
    ode(q_Pi, time) = v_Pi_SERCA;
    // membrane potential change
    var V_m: volt {pub: out};
    V_m = q_membrane/C_m;
    var I_stim: fA;
    var stimPeriod: second {init: 1};
    var stimDuration: second {init: 0.001};
    var tPeriod: second;
    tPeriod = time-floor(time/stimPeriod)*stimPeriod;
    I_stim = sel
      case (tPeriod >= 0.3{second}) and (tPeriod <= 0.3{second}+stimDuration):
        0{dimensionless}*0.03{volt}*C_m/stimDuration;
      otherwise:
        0.0{fA};
    endsel;
    var v_Ca_stim: fmol_per_sec;
    v_Ca_stim = sel
      case (tPeriod >= 0.3{second}) and (tPeriod <= 0.3{second}+stimDuration):
        0{dimensionless}*8e3{fmol_per_sec};
      otherwise:
        0.0{fmol_per_sec};
    endsel;
    var sum_I: fA;
    sum_I = I_mem_LCC+I_mem_NCX+I_mem_pCa+I_stim;
    ode(q_membrane, time) = sum_I;
    // changing sarcomere length
    var dSL: m_per_s {pub: out};
    var V_max: m_per_s {init: 19e-6};
    dSL = sel
      case time < 0.06{second}:
        1{dimensionless}*V_max;
      case (time > 0.5{second}) and (time < 1.1{second}):
        -0.1{dimensionless}*V_max;
      otherwise:
        0{dimensionless}*V_max;
    endsel;
    // concentrations
    var vol_cell: pL {init: 38};
    var vol_SR: pL;
    var vol_o: pL {init: 5.182};
    var vol_D: pL {init: 0.0025375};
    var cCai: mM;
    var cCao: mM;
    var cCaSR: mM;
    var cCaD: mM;
    var cNai: mM;
    var pHi: dimensionless;
    vol_SR = vol_cell*0.035{dimensionless};
    cCai = q_Ca_i/vol_myo;
    cCao = q_Ca_o/vol_o;
    cCaD = q_Ca_D/vol_D;
    cCaSR = q_Ca_SR/vol_SR;
    cNai = q_Na_i/vol_myo;
    pHi = -log(q_H/vol_myo);
    // conservation of Ca
    var Ca_tot: fmol;
    Ca_tot = q_Ca_i+q_Ca_o+q_Ca_TRPN+q_Ca_SR+q_Ca_D+q_pCa_Ca+2{dimensionless}*(q_P4_SERCA+q_P5_SERCA+q_P6_SERCA)+q_P3_NCX+q_P4_NCX;
  enddef;
  def map between environment and Ca_leak for
    vars time and t;
    vars q_Ca_SR and q_Ca_SR;
    vars q_Ca_i and q_Ca_i;
    vars v_leak and v_leak;
  enddef;
  def map between environment and crossbridge_TRPN for
    vars time and time;
    vars q_TRPN and q_TRPN;
    vars q_Ca_i and q_Ca_i;
    vars q_Ca_TRPN and q_Ca_TRPN;
    vars q_B_XB and q_B_XB;
    vars q_U_XB and q_U_XB;
    vars q_W_XB and q_W_XB;
    vars q_S_XB and q_S_XB;
    vars v_R_TRPNCa and v_R_TRPNCa;
    vars v_R_BU and v_R_BU;
    vars v_R_UW and v_R_UW;
    vars v_R_WS and v_R_WS;
    vars v_R_SU and v_R_SU;
    vars Tension and T_total;
    vars SL and SL;
    vars dSL and dSL;
  enddef;
  def map between environment and diadCaDiffusion for
    vars time and time;
    vars q_Ca_D and q_Ca_D;
    vars q_Ca_i and q_Ca_i;
    vars v_diadDf and v_diadDf;
  enddef;
  def map between environment and LCC_diadic for
    vars time and t;
    vars q_Ca_D and q_Ca_D;
    vars q_Ca_o and q_Ca_o;
    vars q_membrane and q_mem;
    vars C_m and C_m;
    vars v_Ca_D_LCC and v_Ca_D_LCC;
    vars v_Ca_o_LCC and v_Ca_o_LCC;
    vars I_mem_LCC and I_mem_LCC;
    vars q_000_LCC and q_S000_LCC;
    vars q_010_LCC and q_S010_LCC;
    vars q_020_LCC and q_S020_LCC;
    vars q_100_LCC and q_S100_LCC;
    vars q_110_LCC and q_S110_LCC;
    vars q_120_LCC and q_S120_LCC;
    vars q_001_LCC and q_S001_LCC;
    vars q_011_LCC and q_S011_LCC;
    vars q_021_LCC and q_S021_LCC;
    vars q_101_LCC and q_S101_LCC;
    vars q_111_LCC and q_S111_LCC;
    vars q_121_LCC and q_S121_LCC;
  enddef;
  def map between environment and NCX for
    vars time and t;
    vars C_m and C_m;
    vars q_Na_i and q_Na_i;
    vars q_Ca_i and q_Ca_i;
    vars q_Na_o and q_Na_o;
    vars q_Ca_o and q_Ca_o;
    vars v_Ca_o_NCX and v_Ca_o_NCX;
    vars v_Ca_i_NCX and v_Ca_i_NCX;
    vars v_Na_o_NCX and v_Na_o_NCX;
    vars v_Na_i_NCX and v_Na_i_NCX;
    vars q_P1_NCX and q_P1_NCX;
    vars q_P2_NCX and q_P2_NCX;
    vars q_P3_NCX and q_P3_NCX;
    vars q_P4_NCX and q_P4_NCX;
    vars q_P5_NCX and q_P5_NCX;
    vars q_P6_NCX and q_P6_NCX;
    vars q_membrane and q_mem;
    vars I_mem_NCX and I_mem_NCX;
  enddef;
  def map between environment and pCa for
    vars time and t;
    vars q_Ca_i and q_Ca_i;
    vars q_Ca_o and q_Ca_o;
    vars q_pCa and q_pCa;
    vars q_pCa_Ca and q_pCa_Ca;
    vars v_pCa_R1 and v_pCa_R1;
    vars v_pCa_R2 and v_pCa_R2;
    vars I_mem_pCa and I_mem_pCa;
  enddef;
  def map between environment and PLB for
    vars time and time;
    vars q_PLB and q_PLB;
    vars q_PKACI and q_PKACI;
    vars q_PLB_PKACI and q_PLB_PKACI;
    vars q_PP1 and q_PP1;
    vars q_PLBp_PP1 and q_PLBp_PP1;
    vars q_PLBp and q_PLBp;
    vars q_Ip and q_Ip;
    vars q_Ip_PP1 and q_Ip_PP1;
    vars v_PLBph1 and v_PLBph1;
    vars v_PLBph2 and v_PLBph2;
    vars v_PLBd1 and v_PLBd1;
    vars v_PLBd2 and v_PLBd2;
    vars v_Inh and v_Inh;
  enddef;
  def map between environment and RyR for
    vars time and t;
    vars q_Ca_SR and q_Ca_SR;
    vars q_Ca_D and q_Ca_D;
    vars v_RyR and v_RyR;
    vars v_RyRgate_Ca_D and v_RyRgate_Ca_D;
    vars q_C_RyR and q_C_RyR;
    vars q_O_RyR and q_O_RyR;
    vars q_CI_RyR and q_CI_RyR;
    vars q_I_RyR and q_I_RyR;
  enddef;
  def map between environment and SERCA for
    vars time and t;
    vars q_H and q_H;
    vars q_Ca_i and q_Ca_i;
    vars q_Ca_SR and q_Ca_SR;
    vars q_MgATP and q_MgATP;
    vars q_MgADP and q_MgADP;
    vars q_Pi and q_Pi;
    vars q_PLBp and q_PLBp;
    vars q_PLBp_baseline and q_PLBp_baseline;
    vars v_Ca_i_SERCA and v_Ca_i_SERCA;
    vars v_Ca_SR_SERCA and v_Ca_SR_SERCA;
    vars v_H_SERCA and v_H_SERCA;
    vars v_MgADP_SERCA and v_MgADP_SERCA;
    vars v_MgATP_SERCA and v_MgATP_SERCA;
    vars v_Pi_SERCA and v_Pi_SERCA;
    vars q_P1_SERCA and q_P1_SERCA;
    vars q_P2_SERCA and q_P2_SERCA;
    vars q_P2a_SERCA and q_P2a_SERCA;
    vars q_P4_SERCA and q_P4_SERCA;
    vars q_P5_SERCA and q_P5_SERCA;
    vars q_P6_SERCA and q_P6_SERCA;
    vars q_P8_SERCA and q_P8_SERCA;
    vars q_P9_SERCA and q_P9_SERCA;
    vars q_P10_SERCA and q_P10_SERCA;
  enddef;
  def map between BG_parameters and Ca_leak for
    vars kappa_leak and kappa_leak;
    vars K_Ca_SR and K_Ca_SR;
    vars K_Ca_i and K_Ca_i;
  enddef;
  def map between environment and BG_parameters for
    vars n_CaTRPN and n_CaTRPN;
  enddef;
  def map between BG_parameters and crossbridge_TRPN for
    vars kappa_R_TRPNCa and kappa_R_TRPNCa;
    vars kappa_R_BU and kappa_R_BU;
    vars kappa_R_UW and kappa_R_UW;
    vars kappa_R_WS and kappa_R_WS;
    vars kappa_R_SU and kappa_R_SU;
    vars K_TRPN and K_TRPN;
    vars K_Ca_i and K_Ca_i;
    vars K_Ca_TRPN and K_Ca_TRPN;
    vars K_B_XB and K_B_XB;
    vars K_U_XB and K_U_XB;
    vars K_W_XB and K_W_XB;
    vars K_S_XB and K_S_XB;
    vars n_Tm and n_Tm;
    vars n_CaTRPN and n_CaTRPN;
  enddef;
  def map between BG_parameters and diadCaDiffusion for
    vars kappa_diadDf and kappa_diadDf;
    vars K_Ca_D and K_Ca_D;
    vars K_Ca_i and K_Ca_i;
  enddef;
  def map between BG_parameters and LCC_diadic for
    vars kappa_LCC_Ca1 and kappa_LCC_Ca1;
    vars kappa_LCC_Ca2 and kappa_LCC_Ca2;
    vars kappa_d000 and kappa_d000;
    vars kappa_d010 and kappa_d010;
    vars kappa_d020 and kappa_d020;
    vars kappa_d001 and kappa_d001;
    vars kappa_d011 and kappa_d011;
    vars kappa_d021 and kappa_d021;
    vars kappa_f1_000 and kappa_f1_000;
    vars kappa_f1_100 and kappa_f1_100;
    vars kappa_f1_001 and kappa_f1_001;
    vars kappa_f1_101 and kappa_f1_101;
    vars kappa_f2_000 and kappa_f2_000;
    vars kappa_f2_100 and kappa_f2_100;
    vars kappa_f2_001 and kappa_f2_001;
    vars kappa_f2_101 and kappa_f2_101;
    vars kappa_f3_010 and kappa_f3_010;
    vars kappa_f3_110 and kappa_f3_110;
    vars kappa_f3_011 and kappa_f3_011;
    vars kappa_f3_111 and kappa_f3_111;
    vars kappa_fCa000 and kappa_fCa000;
    vars kappa_fCa100 and kappa_fCa100;
    vars kappa_fCa010 and kappa_fCa010;
    vars kappa_fCa110 and kappa_fCa110;
    vars kappa_fCa020 and kappa_fCa020;
    vars kappa_fCa120 and kappa_fCa120;
    vars K_Ca_D and K_Ca_D;
    vars K_Ca_o and K_Ca_o;
    vars K_000_LCC and K_000_LCC;
    vars K_010_LCC and K_010_LCC;
    vars K_020_LCC and K_020_LCC;
    vars K_100_LCC and K_100_LCC;
    vars K_110_LCC and K_110_LCC;
    vars K_120_LCC and K_120_LCC;
    vars K_001_LCC and K_001_LCC;
    vars K_011_LCC and K_011_LCC;
    vars K_021_LCC and K_021_LCC;
    vars K_101_LCC and K_101_LCC;
    vars K_111_LCC and K_111_LCC;
    vars K_121_LCC and K_121_LCC;
    vars z_rCa and z_rCa;
    vars z_fd and z_fd;
    vars z_ff1 and z_ff1;
    vars z_ff2 and z_ff2;
    vars z_ff3 and z_ff3;
    vars z_rd and z_rd;
    vars z_rf1 and z_rf1;
    vars z_rf2 and z_rf2;
    vars z_rf3 and z_rf3;
  enddef;
  def map between BG_parameters and NCX for
    vars kappa_1_NCX and kappa_1_NCX;
    vars kappa_2_NCX and kappa_2_NCX;
    vars kappa_3_NCX and kappa_3_NCX;
    vars kappa_4_NCX and kappa_4_NCX;
    vars kappa_5_NCX and kappa_5_NCX;
    vars kappa_6_NCX and kappa_6_NCX;
    vars K_1_NCX and K_1_NCX;
    vars K_2_NCX and K_2_NCX;
    vars K_3_NCX and K_3_NCX;
    vars K_4_NCX and K_4_NCX;
    vars K_5_NCX and K_5_NCX;
    vars K_6_NCX and K_6_NCX;
    vars K_Na_i and K_Na_i;
    vars K_Ca_i and K_Ca_i;
    vars K_Na_o and K_Na_o;
    vars K_Ca_o and K_Ca_o;
    vars nNa_o_NCX and nNa_o_NCX;
    vars nNa_i_NCX and nNa_i_NCX;
    vars zf_NCX and zf_NCX;
    vars zr_NCX and zr_NCX;
  enddef;
  def map between BG_parameters and pCa for
    vars kappa_pCa_R1 and kappa_pCa_R1;
    vars kappa_pCa_R2 and kappa_pCa_R2;
    vars K_Ca_i and K_Ca_i;
    vars K_Ca_o and K_Ca_o;
    vars K_pCa and K_pCa;
    vars K_pCa_Ca and K_pCa_Ca;
  enddef;
  def map between BG_parameters and PLB for
    vars kappa_PLBph1 and kappa_PLBph1;
    vars kappa_PLBph2 and kappa_PLBph2;
    vars kappa_PLBd1 and kappa_PLBd1;
    vars kappa_PLBd2 and kappa_PLBd2;
    vars kappa_Inh and kappa_Inh;
    vars K_PLB and K_PLB;
    vars K_PKACI and K_PKACI;
    vars K_PLB_PKACI and K_PLB_PKACI;
    vars K_PP1 and K_PP1;
    vars K_PLBp_PP1 and K_PLBp_PP1;
    vars K_PLBp and K_PLBp;
    vars K_Ip and K_Ip;
    vars K_Ip_PP1 and K_Ip_PP1;
  enddef;
  def map between BG_parameters and RyR for
    vars kappa_RyR and kappa_RyR;
    vars kappa_OC and kappa_OC;
    vars kappa_CCI and kappa_CCI;
    vars kappa_CII and kappa_CII;
    vars kappa_IO and kappa_IO;
    vars K_Ca_SR and K_Ca_SR;
    vars K_Ca_D and K_Ca_D;
    vars K_C_RyR and K_C_RyR;
    vars K_CI_RyR and K_CI_RyR;
    vars K_I_RyR and K_I_RyR;
    vars K_O_RyR and K_O_RyR;
  enddef;
  def map between BG_parameters and SERCA for
    vars kappa_SERCA_R1_2 and kappa_SERCA_R1_2;
    vars kappa_SERCA_R2_4 and kappa_SERCA_R2_4;
    vars kappa_SERCA_R2_2a and kappa_SERCA_R2_2a;
    vars kappa_SERCA_R4_5 and kappa_SERCA_R4_5;
    vars kappa_SERCA_R5_6 and kappa_SERCA_R5_6;
    vars kappa_SERCA_R6_8 and kappa_SERCA_R6_8;
    vars kappa_SERCA_R8_9 and kappa_SERCA_R8_9;
    vars kappa_SERCA_R9_10 and kappa_SERCA_R9_10;
    vars kappa_SERCA_R10_1 and kappa_SERCA_R10_1;
    vars K_P1_SERCA and K_P1_SERCA;
    vars K_P2_SERCA and K_P2_SERCA;
    vars K_P2a_SERCA and K_P2a_SERCA;
    vars K_P4_SERCA and K_P4_SERCA;
    vars K_P5_SERCA and K_P5_SERCA;
    vars K_P6_SERCA and K_P6_SERCA;
    vars K_P8_SERCA and K_P8_SERCA;
    vars K_P9_SERCA and K_P9_SERCA;
    vars K_P10_SERCA and K_P10_SERCA;
    vars K_H and K_H;
    vars K_Ca_i and K_Ca_i;
    vars K_Ca_SR and K_Ca_SR;
    vars K_MgATP and K_MgATP;
    vars K_MgADP and K_MgADP;
    vars K_Pi and K_Pi;
    vars K_PLBp and K_PLBp;
  enddef;
  def map between constants and Ca_leak for
    vars R and R;
    vars T and T;
  enddef;
  def map between constants and crossbridge_TRPN for
    vars R and R;
    vars T and T;
  enddef;
  def map between constants and diadCaDiffusion for
    vars R and R;
    vars T and T;
  enddef;
  def map between constants and LCC_diadic for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and NCX for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and pCa for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and PLB for
    vars R and R;
    vars T and T;
  enddef;
  def map between constants and RyR for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between constants and SERCA for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  // def map between constants and environment for
  //     vars F and F;
  // enddef;
  def map between ion_valences and LCC_diadic for
    vars zCa and zCa;
  enddef;
  def map between ion_valences and pCa for
    vars zCa and zCa;
  enddef;
enddef;
