def model Nima_2016 as
  // capacitance is changed, initial values changed to S.S . no stimulus for glucose_m
  def unit per_second as
    unit second {expo: -1};
  enddef;
  // def unit per_second5 as
  //     unit second {expo: -5};
  // enddef;
  def unit volt_per_second as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit per_volt_per_second as
    unit volt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_volt4_per_second as
    unit volt {expo: -4};
    unit second {expo: -1};
  enddef;
  def unit per_volt3_per_second as
    unit volt {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_volt2_per_second as
    unit volt {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit umol as
    unit mole {pref: micro};
  enddef;
  def unit per_umol as
    unit umol {expo: -1};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit um2 as
    unit metre {expo: 2, pref: micro};
  enddef;
  def unit um as
    unit meter {pref: micro};
  enddef;
  def unit um3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  // def unit litre as
  //     unit m3 {pref: milli};
  // enddef;
  def unit mol_per_um2 as
    unit mole;
    unit um2 {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit J_per_K_per_mol as
    unit mole {expo: -1};
    unit joule;
    unit kelvin {expo: -1};
  enddef;
  def unit pA_per_cm2 as
    unit ampere {pref: pico};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit uA as
    unit ampere {pref: micro};
  enddef;
  def unit uA_per_um2 as
    unit uA;
    unit um2 {expo: -1};
  enddef;
  def unit uA_per_A as
    unit uA;
    unit ampere {expo: -1};
  enddef;
  def unit umol_per_mol as
    unit umol;
    unit mole {expo: -1};
  enddef;
  def unit C_per_mol as
    unit mole {expo: -1};
    unit coulomb;
  enddef;
  def unit per_M_per_second as
    unit M {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_M2_per_second as
    unit M {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit uM as
    unit M {pref: micro};
  enddef;
  def unit M2 as
    unit M {expo: 2};
  enddef;
  def unit M3 as
    unit M {expo: 3};
  enddef;
  def unit M3_per_second as
    unit M {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit per_M3_per_second5 as
    unit M {expo: -3};
    unit second {expo: -5};
  enddef;
  def unit M_per_second as
    unit M;
    unit second {expo: -1};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit cm2_per_s as
    unit cm2;
    unit second {expo: -1};
  enddef;
  // def unit uM_per_cm2_per_s as
  //     unit uM;
  //     unit cm2 {expo: -1};
  //     unit second {expo: -1};
  // enddef;
  def unit Farad as
    unit volt {expo: -1};
    unit coulomb;
  enddef;
  def unit uF as
    unit Farad {pref: micro};
  enddef;
  def unit uF_per_cm2 as
    unit Farad {pref: micro};
    unit cm2 {expo: -1};
  enddef;
  def unit umol_per_cm2_per_s as
    unit mole {pref: micro};
    unit cm2 {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit uA_per_cm2 as
    unit uA;
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit m_per_s as
    unit meter;
    unit second {expo: -1};
  enddef;
  def unit m3_mole_per_litre_per_umol as
    unit m3;
    unit mole;
    unit litre {expo: -1};
    unit umol {expo: -1};
  enddef;
  def unit litre_umol_per_mol_per_m3 as
    unit litre;
    unit umol;
    unit mole {expo: -1};
    unit m3 {expo: -1};
  enddef;

  def comp parameters as
    var z_Cl: dimensionless {init: -1, pub: out};
    var z_Na: dimensionless {init: 1, pub: out};
    var z_k: dimensionless {init: 1, pub: out};
    var F: C_per_mol {init: 96485, pub: out};
    var R: J_per_K_per_mol {init: 8.314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var capacitance: uF {init: 1e-5, pub: out};
    var A_Apical: m2 {init: 8.4e-10, pub: out};
    var A_Basol: m2 {init: 5e-10, pub: out};
    var v_cell: m3 {init: 5e-16, pub: out};
    var P_Na: m_per_s {init: 1e-9, pub: out};
    var P_k: m_per_s {init: 8e-10, pub: out};
    var P_Cl: m_per_s {init: 8e-10, pub: out};
    var P_P_Na: m_per_s {init: 20.5e-6, pub: out};
    var P_P_k: m_per_s {init: 17.5e-6, pub: out};
    var P_P_Cl: m_per_s {init: 8.8e-6, pub: out};
    var P_Bl_Na: m_per_s {init: 1e-9, pub: out};
    var P_Bl_k: m_per_s {init: 4.06e-8, pub: out};
    var P_Bl_Cl: m_per_s {init: 7.22e-9, pub: out};
    var time: second {pub: out};
    var k0_12: per_M2_per_second {init: 140000, pub: out};
    var k0_21: per_second {init: 300, pub: out};
    var k0_23: per_M_per_second {init: 45e3, pub: out};
    var k0_32: per_second {init: 20, pub: out};
    var k0_25: per_second {init: 0, pub: out};
    var k0_52: per_second {init: 0, pub: out};
    var k0_34: per_second {init: 50, pub: out};
    var k0_43: per_second {init: 50, pub: out};
    var k0_45: per_second {init: 800, pub: out};
    var k0_54: per_M_per_second {init: 77778, pub: out};
    var k0_56: per_second {init: 5, pub: out};
    var k0_65: per_M2_per_second {init: 2250, pub: out};
    var k0_61: per_second {init: 25, pub: out};
    var k0_16: per_second {init: 600, pub: out};
    var delta: dimensionless {init: 0.7, pub: out};
    var alpha_p: dimensionless {init: 0.3, pub: out};
    var alpha_pp: dimensionless {init: 0, pub: out};
    // ar N_C: dimensionless {init: 6e10};
    // var N_Avo: per_mol {init: 6.022e23};
    // var C_T: umol {pub: out};
    var n: dimensionless {init: 2, pub: out};
    var z_c: dimensionless {init: -2, pub: out};
    var v_mc: volt {pub: in};
    var mu: dimensionless {pub: out};
    // alpha_p = 1{dimensionless}-delta-alpha_pp;
    // C_T = 1e6{umol_per_mol}*N_C/N_Avo;
    mu = F*v_mc/(R*T);
  enddef;

  def comp Apical_concentrations as
    var Na_m: M {init: 140e-3, pub: out};
    var K_m: M {init: 5.4e-3, pub: out};
    var glucose_m: M {pub: out};
    var Cl_m: M {init: 103e-3, pub: out};
    var k: per_second {init: 0.2, pub: out};
    var glucose_0: M {init: 20e-3, pub: out};
    var glucose_f: M {init: 0.1e-3, pub: out};
    var time: second {pub: in};
    glucose_m = sel
      case (time >= 0{second}) and (time < 60{second}):
        0.1e-3{M};
      case time >= 60{second}:
        (glucose_0-glucose_f)*exp(-k*(time-60{second}))+glucose_f;
    endsel;
  enddef;

  def comp Apical_voltage as
    var v_mc: volt {init: -49e-3, pub: out};
    var time: second {pub: in};
    var capacitance: uF {pub: in};
    var I_D_Na: uA {pub: in};
    var I_D_K: uA {pub: in};
    var I_D_Cl: uA {pub: in};
    var I_D_P_Na: uA {pub: in};
    var I_D_P_K: uA {pub: in};
    var I_D_P_Cl: uA {pub: in};
    // var I_NaCl: uA {pub: in};
    var I_Na_SGLT: uA {pub: in};
    // var I_Gl_SGLT: uA {pub: in};
    ode(v_mc, time) = (I_D_Na+I_D_K+I_D_Cl+I_Na_SGLT+I_D_P_Na+I_D_P_K+I_D_P_Cl)/capacitance;
  enddef;

  def comp Cell_concentration as
    var Na_i: M {init: 49e-3, pub: out};
    var glucose_i: M {init: 12e-3, pub: out};
    var K_i: M {init: 129e-3, pub: out};
    var Cl_i: M {init: 57e-3, pub: out};
    var v_cell: m3 {pub: in};
    var J_Na_SGLT: umol_per_s {pub: in};
    var J_Gl_SGLT: umol_per_s {pub: in};
    var J_Na_NaK: umol_per_s {pub: in};
    var J_K_NaK: umol_per_s {pub: in};
    var J_NaCl: umol_per_s {pub: in};
    var J_D_Na: umol_per_s {pub: in};
    var J_D_Bl_Na: umol_per_s {pub: in};
    var J_GLUT: umol_per_s {pub: in};
    var J_D_K: umol_per_s {pub: in};
    var J_D_Bl_K: umol_per_s {pub: in};
    var J_D_Cl: umol_per_s {pub: in};
    var J_D_Bl_Cl: umol_per_s {pub: in};
    var time: second {pub: in};
    var theta_1: dimensionless {init: 1};
    var theta_2: dimensionless {init: 1};
    var theta_3: dimensionless {init: 1};
    var theta_4: dimensionless {init: 1};
    var theta_5: dimensionless {init: 1};
    var theta_6: dimensionless {init: 1};
    var theta_7: dimensionless {init: 1};
    var theta_8: dimensionless {init: 1};
    var theta_9: dimensionless {init: 1};
    var theta_10: dimensionless {init: 1};
    var theta_11: dimensionless {init: 1};
    var theta_12: dimensionless {init: 1};
    var theta_13: dimensionless {init: 1};
    ode(Na_i, time) = 1e-9{m3_mole_per_litre_per_umol}/v_cell*(theta_1*J_Na_SGLT+theta_2*J_Na_NaK+theta_3*J_NaCl+theta_4*J_D_Na+theta_5*J_D_Bl_Na);
    ode(glucose_i, time) = 1e-9{m3_mole_per_litre_per_umol}/v_cell*(theta_6*J_Gl_SGLT-theta_7*J_GLUT);
    ode(K_i, time) = 1e-9{m3_mole_per_litre_per_umol}/v_cell*(theta_8*J_K_NaK+theta_9*J_D_K+theta_10*J_D_Bl_K);
    ode(Cl_i, time) = 1e-9{m3_mole_per_litre_per_umol}/v_cell*(theta_11*J_NaCl+theta_12*J_D_Cl+theta_13*J_D_Bl_Cl);
  enddef;

  def comp Basolateral_concentrations as
    var Na_s: M {init: 140e-3, pub: out};
    var glucose_s: M {init: 10e-3, pub: out};
    var Cl_s: M {init: 103e-3, pub: out};
    var K_s: M {init: 5.4e-3, pub: out};
    // var time: second {pub: out};
  enddef;

  def comp Basol_voltage as
    var v_sc: volt {init: -52e-3, pub: out};
    var time: second {pub: in};
    var capacitance: uF {pub: in};
    var I_D_Bl_Na: uA {pub: in};
    var I_D_Bl_K: uA {pub: in};
    var I_D_Bl_Cl: uA {pub: in};
    var I_Na_NaK: uA {pub: in};
    var I_K_NaK: uA {pub: in};
    var I_D_P_Na: uA {pub: in};
    var I_D_P_K: uA {pub: in};
    var I_D_P_Cl: uA {pub: in};
    // var I_GLUT: uA {pub: in};
    ode(v_sc, time) = (I_D_Bl_Na+I_D_Bl_K+I_D_Bl_Cl+I_Na_NaK+I_K_NaK-I_D_P_Na-I_D_P_K-I_D_P_Cl)/capacitance;
  enddef;

  def comp rate_constants as
    var Na_i: M {pub: in};
    var Na_m: M {pub: in};
    var glucose_i: M {pub: in};
    var glucose_m: M {pub: in};
    var k_12: per_second {pub: out};
    var ks_12: per_M2_per_second {pub: out};
    var k_21: per_second {pub: out};
    // var k_23: per_second {pub: out};
    var k_32: per_second {pub: out};
    var k_25: per_second {pub: out};
    var k_52: per_second {pub: out};
    var k_34: per_second {pub: out};
    var k_43: per_second {pub: out};
    var k_45: per_second {pub: out};
    var k_54: per_second {pub: out};
    var k_56: per_second {pub: out};
    var k_65: per_second {pub: out};
    var k_61: per_second {pub: out};
    var k_16: per_second {pub: out};
    var k0_12: per_M2_per_second {pub: in};
    var k0_21: per_second {pub: in};
    // var k0_23: per_M_per_second {pub: in};
    var k0_32: per_second {pub: in};
    var k0_25: per_second {pub: in};
    var k0_52: per_second {pub: in};
    var k0_34: per_second {pub: in};
    var k0_43: per_second {pub: in};
    var k0_45: per_second {pub: in};
    var k0_54: per_M_per_second {pub: in};
    // var k0_25: per_second {pub: in};
    // var k0_52: per_second {pub: in};
    var k0_56: per_second {pub: in};
    var k0_65: per_M2_per_second {pub: in};
    var k0_61: per_second {pub: in};
    var k0_16: per_second {pub: in};
    // var k0_54_temp: per_M_per_second {pub: out};
    // var k_52_temp: per_second {pub: out};
    var delta: dimensionless {pub: in};
    var n: dimensionless {pub: in};
    var z_c: dimensionless {pub: in};
    var z_Na: dimensionless {pub: in};
    var alpha_p: dimensionless {pub: in};
    // var alpha_pp: dimensionless {pub: in};
    // var C_T: umol {pub: in};
    var mu: dimensionless {pub: in};
    ks_12 = k0_12*exp(-n*alpha_p*mu/2{dimensionless});
    // k_12 = ks_12*pow(Na_m, n);
    k_12 = k0_12*exp(-alpha_p*mu)*sqr(Na_m);
    k_21 = k0_21*exp(n*z_Na*alpha_p*mu/2{dimensionless});
    // k_23 = k0_23*glucose_m;
    k_32 = k0_32;
    k_34 = k0_34;
    k_43 = k0_43;
    k_45 = k0_45;
    k_54 = k0_54*glucose_i;
    k_25 = k0_25;
    // k_52_temp = k0_52*exp((z_c+n)*delta*mu/2{dimensionless});
    k_56 = k0_56;
    k_65 = k0_65*sqr(Na_i);
    k_61 = k0_61*exp(z_c*delta*mu/2{dimensionless});
    k_16 = k0_16*exp(-z_c*delta*mu/2{dimensionless});
    k_52 = k0_52;
    // k0_54_temp = k0_23*k_34*k_45/(k_43*k_32);
  enddef;

  def comp phenomonological_constants as
    var epsilon: per_second {pub: out};
    var lambda: per_M3_per_second5 {pub: out};
    var chi: M {pub: out};
    var alpha: M3 {pub: out};
    var beta: M2 {pub: out};
    var gamma: M3_per_second {pub: out};
    var phi: M_per_second {pub: out};
    var k_12: per_second {pub: in};
    var k_21: per_second {pub: in};
    // var k_23: per_second {pub: in};
    var k_32: per_second {pub: in};
    var k_34: per_second {pub: in};
    var k_43: per_second {pub: in};
    var k_45: per_second {pub: in};
    var k_54: per_second {pub: in};
    var k_25: per_second {pub: in};
    var k_52: per_second {pub: in};
    var k_56: per_second {pub: in};
    var k_65: per_second {pub: in};
    var k_61: per_second {pub: in};
    var k_16: per_second {pub: in};
    var ks_12: per_M2_per_second {pub: in};
    var k0_23: per_M_per_second {pub: in};
    // var C_T: umol {pub: in};
    var F: C_per_mol {pub: in};
    var Na_m: M {pub: in};
    var glucose_m: M {pub: in};
    var n_SGLT: dimensionless {init: 180e6, pub: out};
    var J_Na_SGLT: umol_per_s {pub: out};
    var I_Na_SGLT: uA {pub: out};
    var J_Gl_SGLT: umol_per_s {pub: out};
    var J_GL_SGLT1: umol_per_s {pub: out};
    // var I_Gl_SGLT: uA {pub: out};
    lambda = ks_12*k0_23*(k_43*k_54*k_65+k_34*k_54*k_65+k_45*k_52*k_65+k_43*k_52*k_65+k_34*k_52*k_65+k_34*k_45*k_65+k_45*k_56*k_61+k_43*k_56*k_61+k_34*k_56*k_61+k_43*k_54*k_61+k_34*k_54*k_61+k_45*k_52*k_61+k_43*k_52*k_61+k_34*k_52*k_61+k_34*k_45*k_61+k_34*k_45*k_56);
    chi = 1{dimensionless}/lambda*ks_12*(k_32*k_43*k_54*k_65+k_25*k_43*k_54*k_65+k_25*k_34*k_54*k_65+k_25*k_32*k_54*k_65+k_34*k_45*k_52*k_65+k_32*k_45*k_52*k_65+k_32*k_43*k_52*k_65+k_25*k_34*k_45*k_65+k_25*k_32*k_45*k_65+k_25*k_32*k_43*k_65+k_34*k_45*k_56*k_61+k_32*k_45*k_56*k_61+k_32*k_43*k_56*k_61+k_32*k_43*k_54*k_61+k_25*k_43*k_54*k_61+k_25*k_34*k_54*k_61+k_25*k_32*k_54*k_61+k_34*k_45*k_52*k_61+k_32*k_45*k_52*k_61+k_32*k_43*k_52*k_61+k_25*k_34*k_45*k_61+k_25*k_32*k_45*k_61+k_25*k_32*k_43*k_61+k_25*k_34*k_45*k_56+k_25*k_32*k_45*k_56+k_25*k_32*k_43*k_56);
    beta = 1{dimensionless}/lambda*k0_23*(k_16*k_43*k_54*k_65+k_16*k_34*k_54*k_65+k_16*k_45*k_52*k_65+k_16*k_43*k_52*k_65+k_16*k_34*k_52*k_65+k_16*k_34*k_45*k_65+k_34*k_45*k_56*k_61+k_16*k_34*k_45*k_56);
    alpha = 1{dimensionless}/lambda*(k_21*k_32*k_43*k_54*k_65+k_16*k_32*k_43*k_54*k_65+k_16*k_25*k_43*k_54*k_65+k_16*k_21*k_43*k_54*k_65+k_16*k_25*k_34*k_54*k_65+k_16*k_21*k_34*k_54*k_65+k_16*k_25*k_32*k_54*k_65+k_16*k_21*k_32*k_54*k_65+k_21*k_34*k_45*k_52*k_65+k_16*k_34*k_45*k_52*k_65+k_21*k_32*k_45*k_52*k_65+k_16*k_32*k_45*k_52*k_65+k_21*k_32*k_43*k_52*k_65+k_16*k_32*k_43*k_52*k_65+k_16*k_25*k_34*k_45*k_65+k_16*k_21*k_34*k_45*k_65+k_16*k_25*k_32*k_45*k_65+k_16*k_21*k_32*k_45*k_65+k_16*k_25*k_32*k_43*k_65+k_16*k_21*k_32*k_43*k_65+k_25*k_34*k_45*k_56*k_61+k_21*k_34*k_45*k_56*k_61+k_25*k_32*k_45*k_56*k_61+k_21*k_32*k_45*k_56*k_61+k_25*k_32*k_43*k_56*k_61+k_21*k_32*k_43*k_56*k_61+k_21*k_32*k_43*k_54*k_61+k_21*k_34*k_45*k_52*k_61+k_21*k_32*k_45*k_52*k_61+k_21*k_32*k_43*k_52*k_61+k_16*k_25*k_34*k_45*k_56+k_16*k_21*k_34*k_45*k_56+k_16*k_25*k_32*k_45*k_56+k_16*k_21*k_32*k_45*k_56+k_16*k_25*k_32*k_43*k_56+k_16*k_21*k_32*k_43*k_56+k_16*k_21*k_32*k_43*k_54+k_16*k_21*k_34*k_45*k_52+k_16*k_21*k_32*k_45*k_52+k_16*k_21*k_32*k_43*k_52);
    gamma = 1{dimensionless}/lambda*k_16*k_21*k_65*(k_32*k_43*k_54+k_34*k_45*k_52+k_32*k_45*k_52+k_32*k_43*k_52);
    phi = -1{dimensionless}/lambda*ks_12*k_56*k_61*(k_25*k_34*k_45+k_25*k_32*k_45+k_25*k_32*k_43);
    epsilon = -1{dimensionless}/lambda*ks_12*k0_23*k_34*k_45*k_56*k_61;
    J_Na_SGLT = -2{dimensionless}*n_SGLT/6.023e17{per_umol}*(epsilon*sqr(Na_m)*glucose_m+phi*sqr(Na_m)+gamma)/(alpha+beta*glucose_m+chi*sqr(Na_m)+sqr(Na_m)*glucose_m);
    I_Na_SGLT = J_Na_SGLT*F;
    J_Gl_SGLT = 1{dimensionless}/2{dimensionless}*J_Na_SGLT;
    J_GL_SGLT1 = J_Gl_SGLT*36e8{dimensionless};
    // I_Gl_SGLT = -J_Gl_SGLT*F;
  enddef;

  def comp GLUT2 as
    var K_G_c_half: M {init: 23e-3, pub: out};
    var K_G_s_half: M {init: 48e-3, pub: out};
    var glucose_i: M {pub: in};
    var glucose_s: M {pub: in};
    var V_G_c_max: umol_per_s {init: 1.1e-16, pub: out};
    var V_G_s_max: umol_per_s {init: 2.27e-16, pub: out};
    var J_GLUT: umol_per_s {pub: out};
    var J_GLUT2: umol_per_s {pub: out};
    // var I_GLUT: uA {pub: out};
    var n_GLUT: dimensionless {init: 13.2e6};
    var F: C_per_mol {pub: in};
    J_GLUT = (V_G_c_max*K_G_s_half*glucose_i-V_G_s_max*K_G_c_half*glucose_s)/((K_G_c_half+glucose_i)*(K_G_s_half+glucose_i))*n_GLUT;
    J_GLUT2 = J_GLUT*36e8{dimensionless};
    // I_GLUT = -J_GLUT*F;
  enddef;

  def comp Na_Cl as
    var V_NaCl_max: umol_per_s {init: 6.69e-10, pub: out};
    var Na_m: M {pub: in};
    var Cl_m: M {pub: in};
    var Na_i: M {pub: in};
    var Cl_i: M {pub: in};
    var K_1: M {init: 14e-3, pub: out};
    var K_3: M {init: 22e-3, pub: out};
    var K_4: M {init: 56e-3, pub: out};
    var F: C_per_mol {pub: in};
    var J_NaCl: umol_per_s {pub: out};
    var J_NACL: umol_per_s {pub: out};
    // var I_NaCl: uA {pub: out};
    J_NaCl = 2{dimensionless}*V_NaCl_max*(Na_m*Cl_m-Na_i*Cl_i)/(2{dimensionless}*K_1*K_3+K_3*Na_m+K_4*Cl_m+2{dimensionless}*Na_m*Cl_m);
    J_NACL = 36e8{dimensionless}*J_NaCl;
    // I_NaCl = -J_NaCl*F;
  enddef;

  def comp NaK_channel as
    var time: second {pub: in};
    var v_sc: volt {pub: in};
    var F: C_per_mol {pub: in};
    var K_s: M {pub: in};
    var Na_i: M {pub: in};
    var TO_NaK: per_second {pub: out};
    var n_NaK: dimensionless {init: 49.2e5, pub: out};
    var K_Na_i_half: M {init: 10e-3, pub: out};
    var K_K_s_half: M {init: 1.5e-3, pub: out};
    var I_Na_NaK: uA {pub: out};
    var I_K_NaK: uA {pub: out};
    var J_NaK: umol_per_s {pub: out};
    var J_Na_NaK: umol_per_s {pub: out};
    var J_K_NaK: umol_per_s {pub: out};
    // var J_K_NaK: umol_per_s {pub: out};
    I_K_NaK = J_K_NaK*F;
    I_Na_NaK = J_Na_NaK*F;
    J_NaK = TO_NaK*n_NaK/6.023e17{per_umol}*pow(Na_i, 1.36{dimensionless})*1.13{dimensionless}/(pow(K_Na_i_half, 1.36{dimensionless})+pow(Na_i, 1.36{dimensionless}))*1.3{dimensionless}*K_s/(K_K_s_half+K_s);
    TO_NaK = 5.46e+4{per_volt4_per_second}*pow(v_sc, 4{dimensionless})-2.43e+2{per_volt3_per_second}*pow(v_sc, 3{dimensionless})-2e+3{per_volt2_per_second}*sqr(v_sc)+160{per_volt_per_second}*v_sc+51{per_second};
    J_Na_NaK = -3{dimensionless}*J_NaK;
    J_K_NaK = 2{dimensionless}*J_NaK;
    // J_Na_NaK = -108e8{dimensionless}*J_NaK;
    // J_K_NaK = -72e8{dimensionless}*J_NaK;
  enddef;

  def comp Apical_Diffusion as
    var v_mc: volt {pub: in};
    var Na_m: M {pub: in};
    var K_m: M {pub: in};
    var Cl_m: M {pub: in};
    var Na_i: M {pub: in};
    var K_i: M {pub: in};
    var Cl_i: M {pub: in};
    var F: C_per_mol {pub: in};
    var z_Na: dimensionless {pub: in};
    var z_k: dimensionless {pub: in};
    var z_Cl: dimensionless {pub: in};
    var R: J_per_K_per_mol {pub: in};
    var A_Apical: m2 {pub: in};
    var T: kelvin {pub: in};
    var P_Na: m_per_s {pub: in};
    var P_k: m_per_s {pub: in};
    var P_Cl: m_per_s {pub: in};
    var J_D_Na: umol_per_s {pub: out};
    var J_D_NA: umol_per_s {pub: out};
    var I_D_Na: uA {pub: out};
    var J_D_K: umol_per_s {pub: out};
    var I_D_K: uA {pub: out};
    var J_D_Cl: umol_per_s {pub: out};
    var I_D_Cl: uA {pub: out};
    var J_D_Apical: umol_per_s {pub: out};
    J_D_Na = -1e9{litre_umol_per_mol_per_m3}*P_Na*F*z_Na*v_mc/(R*T)*(Na_m-Na_i*exp(z_Na*F*v_mc/(R*T)))/(1{dimensionless}-exp(z_Na*F*v_mc/(R*T)))*A_Apical;
    J_D_NA = 36e8{dimensionless}*J_D_Na;
    I_D_Na = J_D_Na*F;
    J_D_K = -1e9{litre_umol_per_mol_per_m3}*P_k*F*z_k*v_mc/(R*T)*(K_m-K_i*exp(z_k*F*v_mc/(R*T)))/(1{dimensionless}-exp(z_k*F*v_mc/(R*T)))*A_Apical;
    I_D_K = J_D_K*F;
    J_D_Cl = -1e9{litre_umol_per_mol_per_m3}*P_Cl*F*z_Cl*v_mc/(R*T)*(Cl_m-Cl_i*exp(z_Cl*F*v_mc/(R*T)))/(1{dimensionless}-exp(z_Cl*F*v_mc/(R*T)))*A_Apical;
    I_D_Cl = -J_D_Cl*F;
    J_D_Apical = J_D_Na+J_D_K+J_D_Cl;
  enddef;

  def comp Basolateral_Diffusion as
    var v_sc: volt {pub: in};
    var Na_s: M {pub: in};
    var K_s: M {pub: in};
    var Cl_s: M {pub: in};
    var Na_i: M {pub: in};
    var K_i: M {pub: in};
    var Cl_i: M {pub: in};
    var F: C_per_mol {pub: in};
    var z_Na: dimensionless {pub: in};
    var z_k: dimensionless {pub: in};
    var z_Cl: dimensionless {pub: in};
    var R: J_per_K_per_mol {pub: in};
    var A_Basol: m2 {pub: in};
    var T: kelvin {pub: in};
    var P_Bl_Na: m_per_s {pub: in};
    var P_Bl_k: m_per_s {pub: in};
    var P_Bl_Cl: m_per_s {pub: in};
    var J_D_Bl_Na: umol_per_s {pub: out};
    var I_D_Bl_Na: uA {pub: out};
    var J_D_Bl_K: umol_per_s {pub: out};
    var I_D_Bl_K: uA {pub: out};
    var J_D_Bl_Cl: umol_per_s {pub: out};
    var I_D_Bl_Cl: uA {pub: out};
    var J_D_Basolateral: umol_per_s {pub: out};
    J_D_Bl_Na = -1e9{litre_umol_per_mol_per_m3}*P_Bl_Na*F*z_Na*v_sc/(R*T)*(Na_s-Na_i*exp(z_Na*F*v_sc/(R*T)))/(1{dimensionless}-exp(z_Na*F*v_sc/(R*T)))*A_Basol;
    I_D_Bl_Na = J_D_Bl_Na*F;
    J_D_Bl_K = -1e9{litre_umol_per_mol_per_m3}*P_Bl_k*F*z_k*v_sc/(R*T)*(K_s-K_i*exp(z_k*F*v_sc/(R*T)))/(1{dimensionless}-exp(z_k*F*v_sc/(R*T)))*A_Basol;
    I_D_Bl_K = J_D_Bl_K*F;
    J_D_Bl_Cl = -1e9{litre_umol_per_mol_per_m3}*P_Bl_Cl*F*z_Cl*v_sc/(R*T)*(Cl_s-Cl_i*exp(z_Cl*F*v_sc/(R*T)))/(1{dimensionless}-exp(z_Cl*F*v_sc/(R*T)))*A_Basol;
    I_D_Bl_Cl = -J_D_Bl_Cl*F;
    J_D_Basolateral = J_D_Bl_Na+J_D_Bl_K+J_D_Bl_Cl;
  enddef;

  def comp Paracellular_voltage as
    var v_ms: volt {pub: out};
    var v_sc: volt {pub: in};
    var v_mc: volt {pub: in};
    // var time: second {pub: in};
    // var capacitance: uF {pub: in};
    // var I_D_P_Na: uA {pub: in};
    // var I_D_P_K: uA {pub: in};
    // var I_D_P_Cl: uA {pub: in};
    v_ms = v_mc-v_sc;
    // ode(v_ms, time) = (I_D_P_Na+I_D_P_K+I_D_P_Cl)/capacitance;
  enddef;

  def comp Paracellular_Diffusion as
    var v_ms: volt {pub: in};
    var Na_m: M {pub: in};
    var K_m: M {pub: in};
    var Cl_m: M {pub: in};
    var Na_s: M {pub: in};
    var K_s: M {pub: in};
    var Cl_s: M {pub: in};
    var F: C_per_mol {pub: in};
    var z_Na: dimensionless {pub: in};
    var z_k: dimensionless {pub: in};
    var z_Cl: dimensionless {pub: in};
    var R: J_per_K_per_mol {pub: in};
    var A_Apical: m2 {pub: in};
    var T: kelvin {pub: in};
    var P_P_Na: m_per_s {pub: in};
    var P_P_k: m_per_s {pub: in};
    var P_P_Cl: m_per_s {pub: in};
    var J_D_P_Na: umol_per_s {pub: out};
    var I_D_P_Na: uA {pub: out};
    var J_D_P_K: umol_per_s {pub: out};
    var I_D_P_K: uA {pub: out};
    var J_D_P_Cl: umol_per_s {pub: out};
    var I_D_P_Cl: uA {pub: out};
    var J_D_Paracellular: umol_per_s {pub: out};
    J_D_P_Na = -1e9{litre_umol_per_mol_per_m3}*P_P_Na*F*z_Na*v_ms/(R*T)*(Na_m-Na_s*exp(z_Na*F*v_ms/(R*T)))/(1{dimensionless}-exp(z_Na*F*v_ms/(R*T)))*1e-12{m2};
    I_D_P_Na = J_D_P_Na*F;
    J_D_P_K = -1e9{litre_umol_per_mol_per_m3}*P_P_k*F*z_k*v_ms/(R*T)*(K_m-K_s*exp(z_k*F*v_ms/(R*T)))/(1{dimensionless}-exp(z_k*F*v_ms/(R*T)))*1e-12{m2};
    I_D_P_K = J_D_P_K*F;
    J_D_P_Cl = -1e9{litre_umol_per_mol_per_m3}*P_P_Cl*F*z_Cl*v_ms/(R*T)*(Cl_m-Cl_s*exp(z_Cl*F*v_ms/(R*T)))/(1{dimensionless}-exp(z_Cl*F*v_ms/(R*T)))*1e-12{m2};
    I_D_P_Cl = -J_D_P_Cl*F;
    J_D_Paracellular = J_D_P_Na+J_D_P_K+J_D_P_Cl;
  enddef;

  def comp interstitium_concentration as
    var glucose_s: M {init: 10e-3, pub: out};
  enddef;
  // def map between parameters and GLUT2 for
  //     vars F and F;
  // enddef;
  def map between rate_constants and phenomonological_constants for
    vars ks_12 and ks_12;
    vars k_12 and k_12;
    vars k_21 and k_21;
    // vars k_23 and k_23;
    vars k_32 and k_32;
    vars k_25 and k_25;
    vars k_52 and k_52;
    vars k_34 and k_34;
    vars k_43 and k_43;
    vars k_45 and k_45;
    vars k_54 and k_54;
    vars k_56 and k_56;
    vars k_65 and k_65;
    vars k_61 and k_61;
    vars k_16 and k_16;
  enddef;
  def map between phenomonological_constants and Apical_concentrations for
    vars Na_m and Na_m;
    vars glucose_m and glucose_m;
  enddef;
  def map between phenomonological_constants and Cell_concentration for
    vars J_Na_SGLT and J_Na_SGLT;
    vars J_Gl_SGLT and J_Gl_SGLT;
  enddef;
  def map between phenomonological_constants and parameters for
    vars k0_23 and k0_23;
    // vars C_T and C_T;
    vars F and F;
  enddef;
  def map between phenomonological_constants and Apical_voltage for
    vars I_Na_SGLT and I_Na_SGLT;
    // vars I_Gl_SGLT and I_Gl_SGLT;
  enddef;
  def map between rate_constants and Apical_concentrations for
    vars Na_m and Na_m;
    vars glucose_m and glucose_m;
  enddef;
  def map between rate_constants and Cell_concentration for
    vars Na_i and Na_i;
    vars glucose_i and glucose_i;
  enddef;
  def map between rate_constants and parameters for
    vars k0_12 and k0_12;
    vars k0_21 and k0_21;
    // vars k0_23 and k0_23;
    vars k0_32 and k0_32;
    vars k0_25 and k0_25;
    vars k0_52 and k0_52;
    vars k0_34 and k0_34;
    vars k0_43 and k0_43;
    vars k0_45 and k0_45;
    vars k0_54 and k0_54;
    vars k0_56 and k0_56;
    vars k0_65 and k0_65;
    vars k0_61 and k0_61;
    vars k0_16 and k0_16;
    vars delta and delta;
    vars alpha_p and alpha_p;
    // vars alpha_pp and alpha_pp;
    // vars C_T and C_T;
    vars n and n;
    vars z_c and z_c;
    vars z_Na and z_Na;
    vars mu and mu;
  enddef;
  def map between Cell_concentration and GLUT2 for
    vars glucose_i and glucose_i;
    vars J_GLUT and J_GLUT;
  enddef;
  def map between interstitium_concentration and GLUT2 for
    vars glucose_s and glucose_s;
  enddef;
  def map between parameters and GLUT2 for
    vars F and F;
  enddef;
  // def map between GLUT2 and Basol_voltage for
  //     vars I_GLUT and I_GLUT;
  // enddef;
  def map between Cell_concentration and Na_Cl for
    vars Na_i and Na_i;
    vars Cl_i and Cl_i;
    vars J_NaCl and J_NaCl;
  enddef;
  def map between Na_Cl and parameters for
    vars F and F;
  enddef;
  // def map between Cell_concentration and Apical_concentration for
  //     vars time and time;
  //     vars v_cell and v_cell;
  // enddef;
  def map between Apical_concentrations and Na_Cl for
    vars Na_m and Na_m;
    vars Cl_m and Cl_m;
    // vars F and F;
  enddef;
  // def map between parameters and Apical_voltage for
  //     vars capacitance and capacitance;
  //     vars time and time;
  // enddef;
  // def map between Na_Cl and Apical_voltage for
  //     vars I_NaCl and I_NaCl;
  // enddef;
  def map between parameters and NaK_channel for
    vars F and F;
    vars time and time;
  enddef;
  def map between Cell_concentration and NaK_channel for
    vars Na_i and Na_i;
    vars J_Na_NaK and J_Na_NaK;
    vars J_K_NaK and J_K_NaK;
  enddef;
  def map between Basolateral_concentrations and NaK_channel for
    vars K_s and K_s;
  enddef;
  def map between Basol_voltage and NaK_channel for
    vars I_Na_NaK and I_Na_NaK;
    vars I_K_NaK and I_K_NaK;
    vars v_sc and v_sc;
  enddef;
  def map between Cell_concentration and Apical_Diffusion for
    vars Na_i and Na_i;
    vars K_i and K_i;
    vars Cl_i and Cl_i;
    vars J_D_Na and J_D_Na;
    vars J_D_K and J_D_K;
    vars J_D_Cl and J_D_Cl;
  enddef;
  // def map between Apical_concentrations and Cell_concentration for
  //     vars time and time;
  // enddef;
  def map between Apical_concentrations and Apical_Diffusion for
    vars Na_m and Na_m;
    vars K_m and K_m;
    vars Cl_m and Cl_m;
    // vars F and F;
  enddef;
  def map between parameters and Apical_Diffusion for
    vars F and F;
    vars z_Na and z_Na;
    vars z_k and z_k;
    vars z_Cl and z_Cl;
    vars R and R;
    vars T and T;
    vars A_Apical and A_Apical;
    vars P_Na and P_Na;
    vars P_k and P_k;
    vars P_Cl and P_Cl;
  enddef;
  // def map between parameters and Cell_concentration for
  //     vars v_cell and v_cell;
  // enddef;
  // def map between parameters and Apical_voltage for
  //     vars time and time;
  // enddef;
  def map between Apical_Diffusion and Apical_voltage for
    vars I_D_Na and I_D_Na;
    vars I_D_K and I_D_K;
    vars I_D_Cl and I_D_Cl;
    vars v_mc and v_mc;
  enddef;
  def map between parameters and Apical_voltage for
    vars capacitance and capacitance;
    vars time and time;
    vars v_mc and v_mc;
  enddef;
  def map between Cell_concentration and Basolateral_Diffusion for
    vars Na_i and Na_i;
    vars K_i and K_i;
    vars Cl_i and Cl_i;
    vars J_D_Bl_Na and J_D_Bl_Na;
    vars J_D_Bl_K and J_D_Bl_K;
    vars J_D_Bl_Cl and J_D_Bl_Cl;
  enddef;
  // def map between Basolateral_concentrations and Cell_concentration for
  //     vars time and time;
  // enddef;
  def map between Basolateral_concentrations and Basolateral_Diffusion for
    vars Na_s and Na_s;
    vars K_s and K_s;
    vars Cl_s and Cl_s;
    // vars F and F;
  enddef;
  def map between parameters and Basolateral_Diffusion for
    vars F and F;
    vars z_Na and z_Na;
    vars z_k and z_k;
    vars z_Cl and z_Cl;
    vars R and R;
    vars T and T;
    vars A_Basol and A_Basol;
    vars P_Bl_Na and P_Bl_Na;
    vars P_Bl_k and P_Bl_k;
    vars P_Bl_Cl and P_Bl_Cl;
  enddef;
  def map between parameters and Cell_concentration for
    vars v_cell and v_cell;
    vars time and time;
  enddef;
  // def map between Basolateral_concentrations and Basol_voltage for
  //     vars time and time;
  // enddef;
  def map between Basolateral_Diffusion and Basol_voltage for
    vars I_D_Bl_Na and I_D_Bl_Na;
    vars I_D_Bl_K and I_D_Bl_K;
    vars I_D_Bl_Cl and I_D_Bl_Cl;
    vars v_sc and v_sc;
  enddef;
  def map between parameters and Basol_voltage for
    vars capacitance and capacitance;
    vars time and time;
  enddef;
  def map between Apical_concentrations and Paracellular_Diffusion for
    vars Na_m and Na_m;
    vars K_m and K_m;
    vars Cl_m and Cl_m;
    // vars F and F;
  enddef;
  def map between Apical_concentrations and parameters for
    vars time and time;
    // vars F and F;
  enddef;
  def map between parameters and Paracellular_Diffusion for
    vars F and F;
    vars z_Na and z_Na;
    vars z_k and z_k;
    vars z_Cl and z_Cl;
    vars R and R;
    vars T and T;
    vars A_Apical and A_Apical;
    vars P_P_Na and P_P_Na;
    vars P_P_k and P_P_k;
    vars P_P_Cl and P_P_Cl;
  enddef;
  // def map between Apical_concentrations and Paracellular_voltage for
  //     vars time and time;
  // enddef;
  def map between Paracellular_Diffusion and Paracellular_voltage for
    // vars I_D_P_Na and I_D_P_Na;
    // vars I_D_P_K and I_D_P_K;
    // vars I_D_P_Cl and I_D_P_Cl;
    vars v_ms and v_ms;
  enddef;
  // def map between parameters and Paracellular_voltage for
  //     vars capacitance and capacitance;
  //     vars time and time;
  // enddef;
  def map between Basol_voltage and Paracellular_voltage for
    vars v_sc and v_sc;
  enddef;
  def map between Apical_voltage and Paracellular_voltage for
    vars v_mc and v_mc;
  enddef;
  def map between Apical_voltage and Paracellular_Diffusion for
    vars I_D_P_Na and I_D_P_Na;
    vars I_D_P_K and I_D_P_K;
    vars I_D_P_Cl and I_D_P_Cl;
  enddef;
  def map between Basol_voltage and Paracellular_Diffusion for
    vars I_D_P_Na and I_D_P_Na;
    vars I_D_P_K and I_D_P_K;
    vars I_D_P_Cl and I_D_P_Cl;
  enddef;
  def map between Basolateral_concentrations and Paracellular_Diffusion for
    vars Na_s and Na_s;
    vars K_s and K_s;
    vars Cl_s and Cl_s;
    // vars F and F;
  enddef;
enddef;
