def model individual_KrToy as
  def import using "units_and_constants/units_BG.cellml" for
    unit mM using unit mM;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit J_per_mol using unit J_per_mol;
    unit fmol_per_sec using unit fmol_per_sec;
    unit C_per_mol using unit C_per_mol;
    unit J_per_C using unit J_per_C;
    unit microm3 using unit microm3;
    unit fF using unit fF;
    unit fC using unit fC;
    unit fA using unit fA;
    unit per_second using unit per_second;
    unit millivolt using unit millivolt;
    unit per_sec using unit per_sec;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit fmol_per_L using unit fmol_per_L;
    unit fmol_per_L_per_sec using unit fmol_per_L_per_sec;
    unit per_sec_per_fmol_per_L using unit per_sec_per_fmol_per_L;
    unit uM using unit uM;
    unit mM_per_sec using unit mM_per_sec;
    unit uM_per_sec using unit uM_per_sec;
    unit pL using unit pL;
    unit m_to_u using unit m_to_u;
  enddef;
  def import using "units_and_constants/constants_BG.cellml" for
    comp constants using comp constants;
  enddef;

  def comp environment as
    var time: second {pub: out};
    // initial values
    var q_A_init: fmol;
    var q_B_init: fmol;
    var q_Ci_init: fmol {init: 2e-3};
    var q_C_init: fmol {init: 1e-018};
    var q_Di_init: fmol {init: 2e-3};
    var q_D_init: fmol {init: 1e-18};
    var q_Ei_init: fmol {init: 2e-3};
    var q_E_init: fmol {init: 1e-18};
    var q_ACi_init: fmol {init: 1e-018};
    var q_ECi_init: fmol {init: 1e-018};
    var q_BDi_init: fmol {init: 1e-018};
    var q_CEi_init: fmol {init: 1e-018};
    var q_E1_init: fmol {init: 1e-018};
    var q_DE1_init: fmol {init: 1e-018};
    // stimuli A and B
    // q_A_init = sel
    //     case (time > 10{second}) and (time < 30{second}):
    //         1{fmol};
    //     case time > 90{second}:
    //         1{fmol};
    //     otherwise:
    //         0{fmol};
    // endsel;
    // q_B_init = sel
    //     case (time > 50{second}) and (time < 70{second}):
    //         1{fmol};
    //     case time > 90{second}:
    //         1{fmol};
    //     otherwise:
    //         0{fmol};
    // endsel;
    var tR: second {init: 5};
    var stimMag: fmol {init: 2e-3};
    var stimHolding: fmol {init: 1e-12};
    var stimStA: second {init: 20};
    var stimDurA: second {init: 20};
    var mA: fmol_per_sec;
    mA = stimMag/tR;
    q_A_init = sel
      case (time < stimStA) and (time > stimStA-tR):
        stimHolding+mA*(time-stimStA+tR);
      case (time >= stimStA) and (time < stimStA+stimDurA):
        stimMag+stimHolding;
      case (time < stimStA+tR+stimDurA) and (time >= stimStA+stimDurA):
        stimHolding+(-mA*(time-stimStA-tR-stimDurA));
      otherwise:
        stimHolding;
    endsel;
    var stimStB: second {init: 50};
    var stimDurB: second {init: 20};
    var mB: fmol_per_sec;
    mB = stimMag/tR;
    q_B_init = sel
      case (time < stimStB) and (time > stimStB-tR):
        stimHolding+mB*(time-stimStB+tR);
      case (time >= stimStB) and (time < stimStB+stimDurB):
        stimMag+stimHolding;
      case (time < stimStB+tR+stimDurB) and (time >= stimStB+stimDurB):
        stimHolding+(-mB*(time-stimStB-tR-stimDurB));
      otherwise:
        stimHolding;
    endsel;
    // Global value
    var q_A: fmol {pub: out};
    var q_B: fmol {pub: out};
    var q_Ci: fmol {pub: out};
    var q_C: fmol {pub: out};
    var q_Di: fmol {pub: out};
    var q_D: fmol {pub: out};
    var q_Ei: fmol {pub: out};
    var q_E: fmol {pub: out};
    var q_ACi: fmol {pub: out};
    var q_ECi: fmol {pub: out};
    var q_BDi: fmol {pub: out};
    var q_CEi: fmol {pub: out};
    var q_E1: fmol {pub: out};
    var q_DE1: fmol {pub: out};
    // From submodule
    var q_A_mKrToy: fmol {pub: in};
    var q_B_mKrToy: fmol {pub: in};
    var q_Ci_mKrToy: fmol {pub: in};
    var q_C_mKrToy: fmol {pub: in};
    var q_Di_mKrToy: fmol {pub: in};
    var q_D_mKrToy: fmol {pub: in};
    var q_Ei_mKrToy: fmol {pub: in};
    var q_E_mKrToy: fmol {pub: in};
    var q_ACi_mKrToy: fmol {pub: in};
    var q_ECi_mKrToy: fmol {pub: in};
    var q_BDi_mKrToy: fmol {pub: in};
    var q_CEi_mKrToy: fmol {pub: in};
    var q_E1_mKrToy: fmol {pub: in};
    var q_DE1_mKrToy: fmol {pub: in};
    q_A = q_A_mKrToy+q_A_init;
    q_B = q_B_mKrToy+q_B_init;
    q_Ci = q_Ci_mKrToy+q_Ci_init;
    q_C = q_C_mKrToy+q_C_init;
    q_Di = q_Di_mKrToy+q_Di_init;
    q_D = q_D_mKrToy+q_D_init;
    q_Ei = q_Ei_mKrToy+q_Ei_init;
    q_E = q_E_mKrToy+q_E_init;
    q_ACi = q_ACi_mKrToy+q_ACi_init;
    q_ECi = q_ECi_mKrToy+q_ECi_init;
    q_BDi = q_BDi_mKrToy+q_BDi_init;
    q_CEi = q_CEi_mKrToy+q_CEi_init;
    q_E1 = q_E1_mKrToy+q_E1_init;
    q_DE1 = q_DE1_mKrToy+q_DE1_init;
    // conservation of C
    var cons_C: fmol;
    cons_C = q_C+q_Ci+q_ACi+q_ECi+q_CEi;
  enddef;

  def comp KrToy_parameters as
    var kappa_Re_AC1: fmol_per_sec {init: 41142.6, pub: out};
    var kappa_Re_AC2: fmol_per_sec {init: 0.0149618, pub: out};
    var kappa_Re_EC1: fmol_per_sec {init: 11595.6, pub: out};
    var kappa_Re_EC2: fmol_per_sec {init: 0.00421683, pub: out};
    var kappa_Re_BD1: fmol_per_sec {init: 90871.3, pub: out};
    var kappa_Re_BD2: fmol_per_sec {init: 0.0147222, pub: out};
    var kappa_Re_AND_CE1: fmol_per_sec {init: 210172, pub: out};
    var kappa_Re_AND_CE2: fmol_per_sec {init: 0.077273, pub: out};
    var kappa_Re_AND_DE1: fmol_per_sec {init: 13930.4, pub: out};
    var kappa_Re_AND_DE2: fmol_per_sec {init: 0.0044429, pub: out};
    var kappa_Re_C_negFB: fmol_per_sec {init: 0.00806811, pub: out};
    var kappa_Re_D_negFB: fmol_per_sec {init: 0.0244555, pub: out};
    var kappa_Re_E_negFB: fmol_per_sec {init: 0.0111377, pub: out};
    var K_A: per_fmol {init: 0.236244, pub: out};
    var K_B: per_fmol {init: 0.756913, pub: out};
    var K_Ci: per_fmol {init: 0.0354742, pub: out};
    var K_C: per_fmol {init: 0.365954, pub: out};
    var K_Di: per_fmol {init: 0.00656884, pub: out};
    var K_D: per_fmol {init: 0.2151, pub: out};
    var K_Ei: per_fmol {init: 0.00812711, pub: out};
    var K_E: per_fmol {init: 0.838221, pub: out};
    var K_ACi: per_fmol {init: 2.20191, pub: out};
    var K_ECi: per_fmol {init: 7.81264, pub: out};
    var K_BDi: per_fmol {init: 1.49361, pub: out};
    var K_CEi: per_fmol {init: 0.428683, pub: out};
    var K_E1: per_fmol {init: 0.0825367, pub: out};
    var K_DE1: per_fmol {init: 2.52378, pub: out};
  enddef;

  def comp KrToy as
    var time: second {pub: in};
    var R: J_per_K_per_mol {pub: in};
    var T: kelvin {pub: in};
    // parameters
    var kappa_Re_AC1: fmol_per_sec {pub: in};
    var kappa_Re_AC2: fmol_per_sec {pub: in};
    var kappa_Re_EC1: fmol_per_sec {pub: in};
    var kappa_Re_EC2: fmol_per_sec {pub: in};
    var kappa_Re_BD1: fmol_per_sec {pub: in};
    var kappa_Re_BD2: fmol_per_sec {pub: in};
    var kappa_Re_AND_CE1: fmol_per_sec {pub: in};
    var kappa_Re_AND_CE2: fmol_per_sec {pub: in};
    var kappa_Re_AND_DE1: fmol_per_sec {pub: in};
    var kappa_Re_AND_DE2: fmol_per_sec {pub: in};
    var kappa_Re_C_negFB: fmol_per_sec {pub: in};
    var kappa_Re_D_negFB: fmol_per_sec {pub: in};
    var kappa_Re_E_negFB: fmol_per_sec {pub: in};
    var K_A: per_fmol {pub: in};
    var K_B: per_fmol {pub: in};
    var K_Ci: per_fmol {pub: in};
    var K_C: per_fmol {pub: in};
    var K_Di: per_fmol {pub: in};
    var K_D: per_fmol {pub: in};
    var K_Ei: per_fmol {pub: in};
    var K_E: per_fmol {pub: in};
    var K_ACi: per_fmol {pub: in};
    var K_ECi: per_fmol {pub: in};
    var K_BDi: per_fmol {pub: in};
    var K_CEi: per_fmol {pub: in};
    var K_E1: per_fmol {pub: in};
    var K_DE1: per_fmol {pub: in};
    // Input from global environment
    var q_A_global: fmol {pub: in};
    var q_B_global: fmol {pub: in};
    var q_Ci_global: fmol {pub: in};
    var q_C_global: fmol {pub: in};
    var q_Di_global: fmol {pub: in};
    var q_D_global: fmol {pub: in};
    var q_Ei_global: fmol {pub: in};
    var q_E_global: fmol {pub: in};
    var q_ACi_global: fmol {pub: in};
    var q_ECi_global: fmol {pub: in};
    var q_BDi_global: fmol {pub: in};
    var q_CEi_global: fmol {pub: in};
    var q_E1_global: fmol {pub: in};
    var q_DE1_global: fmol {pub: in};
    // Output to global environment
    var q_A: fmol {init: 1e-16, pub: out};
    var q_B: fmol {init: 1e-16, pub: out};
    var q_Ci: fmol {init: 1e-16, pub: out};
    var q_C: fmol {init: 1e-16, pub: out};
    var q_Di: fmol {init: 1e-16, pub: out};
    var q_D: fmol {init: 1e-16, pub: out};
    var q_Ei: fmol {init: 1e-16, pub: out};
    var q_E: fmol {init: 1e-16, pub: out};
    var q_ACi: fmol {init: 1e-16, pub: out};
    var q_ECi: fmol {init: 1e-16, pub: out};
    var q_BDi: fmol {init: 1e-16, pub: out};
    var q_CEi: fmol {init: 1e-16, pub: out};
    var q_E1: fmol {init: 1e-16, pub: out};
    var q_DE1: fmol {init: 1e-16, pub: out};
    // Constitutive parameters
    var mu_A: J_per_mol;
    var mu_B: J_per_mol;
    var mu_Ci: J_per_mol;
    var mu_C: J_per_mol;
    var mu_Di: J_per_mol;
    var mu_D: J_per_mol;
    var mu_Ei: J_per_mol;
    var mu_E: J_per_mol;
    var mu_ACi: J_per_mol;
    var mu_ECi: J_per_mol;
    var mu_BDi: J_per_mol;
    var mu_CEi: J_per_mol;
    var mu_E1: J_per_mol;
    var mu_DE1: J_per_mol;
    var v_Re_AC1: fmol_per_sec;
    var v_Re_AC2: fmol_per_sec;
    var v_Re_EC1: fmol_per_sec;
    var v_Re_EC2: fmol_per_sec;
    var v_Re_BD1: fmol_per_sec;
    var v_Re_BD2: fmol_per_sec;
    var v_Re_AND_CE1: fmol_per_sec;
    var v_Re_AND_CE2: fmol_per_sec;
    var v_Re_AND_DE1: fmol_per_sec;
    var v_Re_AND_DE2: fmol_per_sec;
    var v_Re_C_negFB: fmol_per_sec;
    var v_Re_D_negFB: fmol_per_sec;
    var v_Re_E_negFB: fmol_per_sec;
    // stoichiometry
    var n: dimensionless {init: 1.4};
    mu_A = R*T*ln(K_A*q_A_global);
    mu_B = R*T*ln(K_B*q_B_global);
    mu_Ci = R*T*ln(K_Ci*q_Ci_global);
    mu_C = R*T*ln(K_C*q_C_global);
    mu_Di = R*T*ln(K_Di*q_Di_global);
    mu_D = R*T*ln(K_D*q_D_global);
    mu_Ei = R*T*ln(K_Ei*q_Ei_global);
    mu_E = R*T*ln(K_E*q_E_global);
    mu_ACi = R*T*ln(K_ACi*q_ACi_global);
    mu_ECi = R*T*ln(K_ECi*q_ECi_global);
    mu_BDi = R*T*ln(K_BDi*q_BDi_global);
    mu_CEi = R*T*ln(K_CEi*q_CEi_global);
    mu_E1 = R*T*ln(K_E1*q_E1_global);
    mu_DE1 = R*T*ln(K_DE1*q_DE1_global);
    v_Re_AC1 = kappa_Re_AC1*(exp((mu_A+n*mu_Ci)/(R*T))-exp(mu_ACi/(R*T)));
    v_Re_AC2 = kappa_Re_AC2*(exp(mu_ACi/(R*T))-exp((mu_A+n*mu_C)/(R*T)));
    v_Re_EC1 = kappa_Re_EC1*(exp((mu_E+n*mu_Ci)/(R*T))-exp(mu_ECi/(R*T)));
    v_Re_EC2 = kappa_Re_EC2*(exp(mu_ECi/(R*T))-exp((mu_E+n*mu_C)/(R*T)));
    v_Re_BD1 = kappa_Re_BD1*(exp((mu_B+n*mu_Di)/(R*T))-exp(mu_BDi/(R*T)));
    v_Re_BD2 = kappa_Re_BD2*(exp(mu_BDi/(R*T))-exp((mu_B+n*mu_D)/(R*T)));
    v_Re_AND_CE1 = 1{dimensionless}*kappa_Re_AND_CE1*(exp((mu_C+n*mu_Ei)/(R*T))-exp(mu_CEi/(R*T)));
    v_Re_AND_CE2 = 1{dimensionless}*kappa_Re_AND_CE2*(exp(mu_CEi/(R*T))-exp((mu_C+n*mu_E1)/(R*T)));
    v_Re_AND_DE1 = 1{dimensionless}*kappa_Re_AND_DE1*(exp((mu_C+n*mu_E1)/(R*T))-exp(mu_DE1/(R*T)));
    v_Re_AND_DE2 = 1{dimensionless}*kappa_Re_AND_DE2*(exp(mu_DE1/(R*T))-exp((mu_D+n*mu_E)/(R*T)));
    v_Re_C_negFB = 1{dimensionless}*kappa_Re_C_negFB*(exp(mu_C/(R*T))-exp(mu_Ci/(R*T)));
    v_Re_D_negFB = 1{dimensionless}*kappa_Re_D_negFB*(exp(mu_D/(R*T))-exp(mu_Di/(R*T)));
    v_Re_E_negFB = 1{dimensionless}*kappa_Re_E_negFB*(exp(mu_E/(R*T))-exp(mu_Ei/(R*T)));
    ode(q_A, time) = -v_Re_AC1+v_Re_AC2;
    ode(q_B, time) = -v_Re_BD1+v_Re_BD2;
    ode(q_Ci, time) = n*(-v_Re_AC1-v_Re_EC1)+v_Re_C_negFB;
    ode(q_C, time) = n*(v_Re_AC2+v_Re_EC2)-v_Re_AND_CE1+v_Re_AND_CE2-v_Re_C_negFB;
    ode(q_Di, time) = -n*v_Re_BD1+v_Re_D_negFB;
    ode(q_D, time) = n*v_Re_BD2-v_Re_AND_DE1+v_Re_AND_DE2-v_Re_D_negFB;
    ode(q_Ei, time) = -n*v_Re_AND_CE1+v_Re_E_negFB;
    ode(q_E, time) = -v_Re_EC1+v_Re_EC2+n*v_Re_AND_DE2-v_Re_E_negFB;
    ode(q_ACi, time) = v_Re_AC1-v_Re_AC2;
    ode(q_ECi, time) = v_Re_EC1-v_Re_EC2;
    ode(q_BDi, time) = v_Re_BD1-v_Re_BD2;
    ode(q_CEi, time) = v_Re_AND_CE1-v_Re_AND_CE2;
    ode(q_E1, time) = n*(v_Re_AND_CE2-v_Re_AND_DE1);
    ode(q_DE1, time) = v_Re_AND_DE1-v_Re_AND_DE2;
    // tests of OR gate
    var q_Ci_AConly: fmol {init: 0.05};
    var q_Ci_EConly: fmol {init: 0.05};
    var q_Ci_sepTotal: fmol;
    ode(q_Ci_AConly, time) = -v_Re_AC1;
    ode(q_Ci_EConly, time) = -v_Re_EC1;
    q_Ci_sepTotal = q_Ci_AConly+q_Ci_EConly;
  enddef;
  def map between environment and KrToy for
    vars time and time;
    vars q_A_mKrToy and q_A;
    vars q_A and q_A_global;
    vars q_B_mKrToy and q_B;
    vars q_B and q_B_global;
    vars q_Ci_mKrToy and q_Ci;
    vars q_Ci and q_Ci_global;
    vars q_C_mKrToy and q_C;
    vars q_C and q_C_global;
    vars q_Di_mKrToy and q_Di;
    vars q_Di and q_Di_global;
    vars q_D_mKrToy and q_D;
    vars q_D and q_D_global;
    vars q_Ei_mKrToy and q_Ei;
    vars q_Ei and q_Ei_global;
    vars q_E_mKrToy and q_E;
    vars q_E and q_E_global;
    vars q_ACi_mKrToy and q_ACi;
    vars q_ACi and q_ACi_global;
    vars q_ECi_mKrToy and q_ECi;
    vars q_ECi and q_ECi_global;
    vars q_BDi_mKrToy and q_BDi;
    vars q_BDi and q_BDi_global;
    vars q_CEi_mKrToy and q_CEi;
    vars q_CEi and q_CEi_global;
    vars q_E1_mKrToy and q_E1;
    vars q_E1 and q_E1_global;
    vars q_DE1_mKrToy and q_DE1;
    vars q_DE1 and q_DE1_global;
  enddef;
  def map between KrToy and KrToy_parameters for
    vars kappa_Re_AC1 and kappa_Re_AC1;
    vars kappa_Re_AC2 and kappa_Re_AC2;
    vars kappa_Re_EC1 and kappa_Re_EC1;
    vars kappa_Re_EC2 and kappa_Re_EC2;
    vars kappa_Re_BD1 and kappa_Re_BD1;
    vars kappa_Re_BD2 and kappa_Re_BD2;
    vars kappa_Re_AND_CE1 and kappa_Re_AND_CE1;
    vars kappa_Re_AND_CE2 and kappa_Re_AND_CE2;
    vars kappa_Re_AND_DE1 and kappa_Re_AND_DE1;
    vars kappa_Re_AND_DE2 and kappa_Re_AND_DE2;
    vars kappa_Re_C_negFB and kappa_Re_C_negFB;
    vars kappa_Re_D_negFB and kappa_Re_D_negFB;
    vars kappa_Re_E_negFB and kappa_Re_E_negFB;
    vars K_A and K_A;
    vars K_B and K_B;
    vars K_Ci and K_Ci;
    vars K_C and K_C;
    vars K_Di and K_Di;
    vars K_D and K_D;
    vars K_Ei and K_Ei;
    vars K_E and K_E;
    vars K_ACi and K_ACi;
    vars K_ECi and K_ECi;
    vars K_BDi and K_BDi;
    vars K_CEi and K_CEi;
    vars K_E1 and K_E1;
    vars K_DE1 and K_DE1;
  enddef;
  def map between constants and KrToy for
    vars R and R;
    vars T and T;
  enddef;
enddef;
