//   FILE :  LR_II_model_1994.xml
//
// CREATED :  28th March 2002
//
// LAST MODIFIED : 30th July 2003
//
// AUTHOR :  Catherine Lloyd
//           The Bioengineering Institute
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the CellML Metadata 1.0 Specification released on 16th
// January, 2002.
//
// DESCRIPTION :  This file contains a CellML description of the mammalian
// ventricular action potential based on the Luo-Rudy II model, 1994.  This model
// is a development of the LR-I model.  In particular, the LR-II model describes
// the processes which regulate [Ca]i (intracellular Calcium concentration), and
// the movement of calcium ions through the cell and to and from the sarcoplasmic
// reticulum.
//
// CHANGES:
//   18/07/2002 - CML - Added more metadata.
//   09/04/2003 - AAC - Added publication date information.
//   05/06/2003 - CML - Fixed MathML in a few components.
//   30/07/2003 - CML - Fixed MathML in a few components.
def model luo_rudy_1994 as
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_mm as
    unit metre {expo: -1, pref: milli};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit mV_per_ms as
    unit mV;
    unit ms {expo: -1};
  enddef;
  def unit per_mV as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_mV_ms as
    unit mV {expo: -1};
    unit ms {expo: -1};
  enddef;
  def unit mS_per_mm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit uF_per_mm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit uA_per_mm2 as
    unit ampere {pref: micro};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: nano};
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit gas_constant_units as
    unit joule {pref: pico};
    unit mole {expo: -1, pref: nano};
    unit kelvin {expo: -1};
  enddef;
  def unit faradays_constant_units as
    unit coulomb {pref: nano};
    unit mole {expo: -1, pref: nano};
  enddef;
  def unit mm_per_ms as
    unit metre {pref: milli};
    unit ms {expo: -1};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;

  def comp environment as
    var time: ms {pub: out};
  enddef;

  def comp membrane as
    var V: mV {init: -70, pub: out};
    var R: gas_constant_units {init: 8.3145e3, pub: out};
    var T: kelvin {init: 310.0, pub: out};
    var F: faradays_constant_units {init: 96845.0, pub: out};
    var dV_dt: mV_per_ms {pub: out};
    var Cm: uF_per_mm2 {init: 0.01};
    var I_st: uA_per_mm2;
    var time: ms {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_Ca_L: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_Kp: uA_per_mm2 {pub: in};
    var i_p_Ca: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_ns_Ca: uA_per_mm2 {pub: in};
    dV_dt = 0{dimensionless}*(I_st-(i_Na+i_Ca_L+i_K+i_K1+i_Kp+i_NaCa+i_p_Ca+i_Na_b+i_Ca_b+i_NaK+i_ns_Ca))/Cm;
    var stimPeriod: dimensionless {init: 1e3};
    var stimDuration: dimensionless {init: 0.5};
    var stimCurrent: dimensionless {init: 0.5};
    I_st = sel
      case rem(time, stimPeriod) < stimDuration:
        stimCurrent;
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(V, time) = dV_dt;
  enddef;

  def comp fast_sodium_current as
    var i_Na: uA_per_mm2 {pub: out};
    var E_Na: mV {pub: out};
    var g_Na: mS_per_mm2 {init: 0.16};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var R: gas_constant_units {pub: in};
    var F: faradays_constant_units {pub: in};
    var T: kelvin {pub: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    i_Na = g_Na*pow(m, 3.0{dimensionless})*h*j*(V_clamp-E_Na);
    E_Na = R*T/F*ln(Nao/Nai);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.0, pub: out};
    var alpha_m: per_ms;
    var beta_m: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    alpha_m = 0.32{per_mV_ms}*(V_clamp+47.13{mV})/(1.0{dimensionless}-exp(-0.1{per_mV}*(V_clamp+47.13{mV})));
    beta_m = 0.08{per_ms}*exp(-V_clamp/11.0{mV});
    ode(m, time) = alpha_m*(1.0{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 1.0, pub: out};
    var alpha_h: per_ms;
    var beta_h: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    alpha_h = sel
      case V_clamp < -40.0{mV}:
        0.135{per_ms}*exp((80.0{mV}+V_clamp)/(-6.8{mV}));
      otherwise:
        0.0{per_ms};
    endsel;
    beta_h = sel
      case V_clamp < -40.0{mV}:
        3.56{per_ms}*exp(0.079{mV}*V_clamp)+310000.0{per_ms}*exp(0.35{per_mV}*V_clamp);
      otherwise:
        1.0{dimensionless}/(0.13{ms}*(1.0{dimensionless}+exp((V_clamp+10.66{mV})/(-11.1{mV}))));
    endsel;
    ode(h, time) = alpha_h*(1.0{dimensionless}-h)-beta_h*h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var j: dimensionless {init: 1.0, pub: out};
    var alpha_j: per_ms;
    var beta_j: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    alpha_j = sel
      case V_clamp < -40.0{mV}:
        (-127140.0{per_mV_ms}*exp(0.2444{per_mV}*V_clamp)-0.00003474{per_mV_ms}*exp(-0.04391{per_mV}*V_clamp))*(V_clamp+37.78{mV})/(1.0{dimensionless}+exp(0.311{per_mV}*(V_clamp+79.23{mV})));
      otherwise:
        0.0{per_ms};
    endsel;
    beta_j = sel
      case V_clamp < -40.0{mV}:
        0.1212{per_ms}*exp(-0.01052{per_mV}*V_clamp)/(1.0{dimensionless}+exp(-0.1378{per_mV}*(V_clamp+40.14{mV})));
      otherwise:
        0.3{per_ms}*exp(-0.0000002535{per_mV}*V_clamp)/(1.0{dimensionless}+exp(-0.1{per_mV}*(V_clamp+32.0{mV})));
    endsel;
    ode(j, time) = alpha_j*(1.0{dimensionless}-j)-beta_j*j;
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L: uA_per_mm2 {pub: out};
    var i_CaCa: uA_per_mm2 {pub: out};
    var i_CaK: uA_per_mm2 {pub: out};
    var i_CaNa: uA_per_mm2 {pub: out};
    var gamma_Nai: dimensionless {init: 0.75, pub: out};
    var gamma_Nao: dimensionless {init: 0.75, pub: out};
    var gamma_Ki: dimensionless {init: 0.75, pub: out};
    var gamma_Ko: dimensionless {init: 0.75, pub: out};
    var I_CaCa: uA_per_mm2;
    var I_CaK: uA_per_mm2;
    var I_CaNa: uA_per_mm2;
    var P_Ca: mm_per_ms {init: 5.4e-6};
    var P_Na: mm_per_ms {init: 6.75e-9};
    var P_K: mm_per_ms {init: 1.93e-9};
    var gamma_Cai: dimensionless {init: 1.0};
    var gamma_Cao: dimensionless {init: 0.34};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var Cai: mM {priv: out, pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cao: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Ki: mM {pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f_Ca: dimensionless {priv: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    i_CaCa = d*f*f_Ca*I_CaCa;
    i_CaNa = d*f*f_Ca*I_CaNa;
    i_CaK = d*f*f_Ca*I_CaK;
    I_CaCa = P_Ca*sqr(2.0{dimensionless})*V_clamp*sqr(F)/(R*T)*(gamma_Cai*Cai*exp(2.0{dimensionless}*V_clamp*F/(R*T))-gamma_Cao*Cao)/(exp(2.0{dimensionless}*V_clamp*F/(R*T))-1.0{dimensionless});
    I_CaNa = P_Na*sqr(1.0{dimensionless})*V_clamp*sqr(F)/(R*T)*(gamma_Nai*Nai*exp(1.0{dimensionless}*V_clamp*F/(R*T))-gamma_Nao*Nao)/(exp(1.0{dimensionless}*V_clamp*F/(R*T))-1.0{dimensionless});
    I_CaK = P_K*sqr(1.0{dimensionless})*V_clamp*sqr(F)/(R*T)*(gamma_Ki*Ki*exp(1.0{dimensionless}*V_clamp*F/(R*T))-gamma_Ko*Ko)/(exp(1.0{dimensionless}*V_clamp*F/(R*T))-1.0{dimensionless});
    i_Ca_L = i_CaCa+i_CaK+i_CaNa;
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {init: 0.0, pub: out};
    var alpha_d: per_ms;
    var beta_d: per_ms;
    var d_infinity: dimensionless;
    var tau_d: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    alpha_d = d_infinity/tau_d;
    d_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V_clamp+10.0{mV})/6.24{mV}));
    tau_d = d_infinity*(1.0{dimensionless}-exp(-(V_clamp+10.0{mV})/6.24{mV}))/(0.035{per_mV_ms}*(V_clamp+10.0{mV}));
    beta_d = (1.0{dimensionless}-d_infinity)/tau_d;
    ode(d, time) = alpha_d*(1.0{dimensionless}-d)-beta_d*d;
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {init: 1.0, pub: out};
    var alpha_f: per_ms;
    var beta_f: per_ms;
    var f_infinity: dimensionless;
    var tau_f: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    alpha_f = f_infinity/tau_f;
    f_infinity = 1.0{dimensionless}/(1.0{dimensionless}+exp((V_clamp+35.06{mV})/8.6{mV}))+0.6{dimensionless}/(1.0{dimensionless}+exp((50.0{mV}-V_clamp)/20.0{mV}));
    tau_f = 1.0{ms}/(0.0197{dimensionless}*exp(-sqr(0.0337{per_mV}*(V_clamp+10.0{mV})))+0.02{dimensionless});
    beta_f = (1.0{dimensionless}-f_infinity)/tau_f;
    ode(f, time) = alpha_f*(1.0{dimensionless}-f)-beta_f*f;
  enddef;

  def comp L_type_Ca_channel_f_Ca_gate as
    var f_Ca: dimensionless {pub: out};
    var Km_Ca: mM {init: 0.6e-3};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    f_Ca = 1.0{dimensionless}/(1.0{dimensionless}+sqr(Cai/Km_Ca));
  enddef;

  def comp time_dependent_potassium_current as
    var i_K: uA_per_mm2 {pub: out};
    var g_K_max: mS_per_mm2 {init: 2.82e-3};
    var g_K: mS_per_mm2;
    var E_K: mV;
    var PR_NaK: dimensionless {init: 0.01833};
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var Nao: mM {pub: in};
    var Nai: mM {pub: in};
    var X: dimensionless {priv: in};
    var Xi: dimensionless {priv: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    g_K = g_K_max*sqrt(Ko/5.4{mM});
    E_K = R*T/F*ln((Ko+PR_NaK*Nao)/(Ki+PR_NaK*Nai));
    i_K = g_K*sqr(X)*Xi*(V_clamp-E_K);
  enddef;

  def comp time_dependent_potassium_current_X_gate as
    var X: dimensionless {init: 0.0, pub: out};
    var alpha_X: per_ms;
    var beta_X: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    alpha_X = 0.0000719{per_mV_ms}*(V_clamp+30.0{mV})/(1.0{dimensionless}-exp(-0.148{dimensionless}*(V_clamp+30.0{mV})));
    beta_X = 0.000131{per_mV_ms}*(V_clamp+30.0{mV})/(-1.0{dimensionless}+exp(0.0687{dimensionless}*(V_clamp+30.0{mV})));
    ode(X, time) = alpha_X*(1.0{dimensionless}-X)-beta_X*X;
  enddef;

  def comp time_dependent_potassium_current_Xi_gate as
    var Xi: dimensionless {pub: out};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    Xi = 1.0{dimensionless}/(1.0{dimensionless}+exp((V_clamp-56.26{mV})/32.1{mV}));
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: uA_per_mm2 {pub: out};
    var E_K1: mV {priv: out, pub: out};
    var g_K1_max: mS_per_mm2 {init: 7.5e-3};
    var g_K1: mS_per_mm2;
    var time: ms {priv: out, pub: in};
    var V: mV {priv: out, pub: in};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var K1_infinity: dimensionless {priv: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    g_K1 = g_K1_max*sqrt(Ko/5.4{mM});
    E_K1 = R*T/F*ln(Ko/Ki);
    i_K1 = g_K1*K1_infinity*(V_clamp-E_K1);
  enddef;

  def comp time_independent_potassium_current_K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: per_ms;
    var beta_K1: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    var E_K1: mV {pub: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    alpha_K1 = 1.02{per_ms}/(1.0{dimensionless}+exp(0.2385{per_mV}*(V_clamp-E_K1-59.215{mV})));
    beta_K1 = (0.49124{per_ms}*exp(0.08032{dimensionless}*(V_clamp+5.476{mV}-E_K1))+exp(0.06175{dimensionless}*(V_clamp-(E_K1+594.31{mV}))))/(1.0{dimensionless}+exp(-0.5143{per_mV}*(V_clamp-E_K1+4.753{mV})));
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
  enddef;

  def comp plateau_potassium_current as
    var i_Kp: uA_per_mm2 {pub: out};
    var E_Kp: mV;
    var g_Kp: mS_per_mm2 {init: 1.83e-4};
    var Kp: dimensionless;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_K1: mV {pub: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    E_Kp = E_K1;
    Kp = 1.0{dimensionless}/(1.0{dimensionless}+exp((7.488{mV}-V_clamp)/5.98{mV}));
    i_Kp = g_Kp*Kp*(V_clamp-E_Kp);
  enddef;

  def comp sarcolemmal_calcium_pump as
    var i_p_Ca: uA_per_mm2 {pub: out};
    var K_mpCa: mM {init: 0.5e-3};
    var I_pCa: uA_per_mm2 {init: 1.15e-2};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    i_p_Ca = I_pCa*Cai/(K_mpCa+Cai);
  enddef;

  def comp sodium_background_current as
    var i_Na_b: uA_per_mm2 {pub: out};
    var g_Nab: mS_per_mm2 {init: 1.41e-5};
    var E_NaN: mV;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_Na: mV {pub: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    E_NaN = E_Na;
    i_Na_b = g_Nab*(V_clamp-E_NaN);
  enddef;

  def comp calcium_background_current as
    var i_Ca_b: uA_per_mm2 {pub: out};
    var g_Cab: mS_per_mm2 {init: 3.016e-5};
    var E_CaN: mV;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    E_CaN = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V_clamp-E_CaN);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: uA_per_mm2 {pub: out};
    var I_NaK: uA_per_mm2 {init: 1.5e-2};
    var f_NaK: dimensionless;
    var K_mNai: mM {init: 10.0};
    var K_mKo: mM {init: 1.5};
    var sigma: dimensionless;
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V_clamp*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V_clamp*F/(R*T)));
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Nao/67.3{dimensionless})-1.0{dimensionless});
    i_NaK = I_NaK*f_NaK*1.0{dimensionless}/(1.0{dimensionless}+pow(K_mNai/Nai, 1.5{dimensionless}))*Ko/(Ko+K_mKo);
  enddef;

  def comp non_specific_calcium_activated_current as
    var i_ns_Ca: uA_per_mm2 {pub: out};
    var i_ns_Na: uA_per_mm2 {pub: out};
    var i_ns_K: uA_per_mm2 {pub: out};
    var P_ns_Ca: mm_per_ms {init: 1.75e-9};
    var gamma_Nai: dimensionless {pub: in};
    var gamma_Nao: dimensionless {pub: in};
    var gamma_Ki: dimensionless {pub: in};
    var gamma_Ko: dimensionless {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Cao: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var Nai: mM {pub: in};
    var Ki: mM {pub: in};
    var I_ns_Na: uA_per_mm2;
    var I_ns_K: uA_per_mm2;
    var K_m_ns_Ca: mM {init: 1.2e-3};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    var V: mV {pub: in};
    var Vns: mV;
    var EnsCa: mV;
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    EnsCa = R*T/F*ln((Ko+Nao)/(Ki+Nai));
    Vns = V_clamp-EnsCa;
    i_ns_Na = I_ns_Na*1.0{dimensionless}/(1.0{dimensionless}+pow(K_m_ns_Ca/Cai, 3.0{dimensionless}));
    i_ns_K = I_ns_K*1.0{dimensionless}/(1.0{dimensionless}+pow(K_m_ns_Ca/Cai, 3.0{dimensionless}));
    i_ns_Ca = i_ns_Na+i_ns_K;
    I_ns_Na = P_ns_Ca*sqr(1.0{dimensionless})*Vns*sqr(F)/(R*T)*(gamma_Nai*Nai*exp(1.0{dimensionless}*Vns*F/(R*T))-gamma_Nao*Nao)/(exp(1.0{dimensionless}*Vns*F/(R*T))-1.0{dimensionless});
    I_ns_K = P_ns_Ca*sqr(1.0{dimensionless})*Vns*sqr(F)/(R*T)*(gamma_Ki*Ki*exp(1.0{dimensionless}*Vns*F/(R*T))-gamma_Ko*Ko)/(exp(1.0{dimensionless}*Vns*F/(R*T))-1.0{dimensionless});
  enddef;

  def comp Na_Ca_exchanger as
    var i_NaCa: uA_per_mm2 {pub: out};
    var K_NaCa: uA_per_mm2 {init: 20.0};
    var K_mNa: mM {init: 87.5};
    var K_mCa: mM {init: 1.38};
    var K_sat: dimensionless {init: 0.1};
    var eta: dimensionless {init: 0.35};
    var time: ms {pub: in};
    var V: mV {pub: in};
    var R: gas_constant_units {pub: in};
    var T: kelvin {pub: in};
    var F: faradays_constant_units {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    var V_clamp: mV;
    var V_hold: mV {init: -80};
    var V_test: mV {init: -70};
    var V_return: mV {init: -80};
    var time_hold: ms {init: 0.5};
    var time_testend: ms {init: 2.5};
    V_clamp = sel
      case time < time_hold:
        V_hold;
      case time < time_testend:
        V_test;
      otherwise:
        V_return;
    endsel;
    i_NaCa = K_NaCa*1.0{dimensionless}/(pow(K_mNa, 3.0{dimensionless})+pow(Nao, 3.0{dimensionless}))*1.0{dimensionless}/(K_mCa+Cao)*1.0{dimensionless}/(1.0{dimensionless}+K_sat*exp((eta-1.0{dimensionless})*V_clamp*F/(R*T)))*(exp(eta*V_clamp*F/(R*T))*pow(Nai, 3.0{dimensionless})*Cao-exp((eta-1.0{dimensionless})*V_clamp*F/(R*T))*pow(Nao, 3.0{dimensionless})*Cai);
  enddef;

  def comp calcium_fluxes_in_the_SR as
    var i_rel: mM_per_ms {pub: out};
    var i_up: mM_per_ms {pub: out};
    var i_leak: mM_per_ms {pub: out};
    var i_tr: mM_per_ms {pub: out};
    var G_rel: per_ms;
    var G_rel_peak: per_ms;
    var G_rel_max: per_ms {init: 60.0};
    var tau_on: ms {init: 2.0};
    var tau_off: ms {init: 2.0};
    var t_CICR: ms {init: 0.0};
    var tau_tr: ms {init: 180.0};
    var K_mrel: mM {init: 0.8e-3};
    var K_mup: mM {init: 0.92e-3};
    var K_leak: per_ms;
    var I_up: mM_per_ms {init: 0.005};
    var Ca_NSR_max: mM {init: 15.0};
    var delta_Ca_i2: mM {init: 0.0};
    var delta_Ca_ith: mM {init: 0.18e-3};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    var Ca_JSR: mM {pub: in};
    var Ca_NSR: mM {pub: in};
    i_rel = G_rel*(Ca_JSR-Cai);
    G_rel = G_rel_peak*(delta_Ca_i2-delta_Ca_ith)/(K_mrel+delta_Ca_i2-delta_Ca_ith)*(1.0{dimensionless}-exp(-t_CICR/tau_on))*exp(-t_CICR/tau_off);
    G_rel_peak = sel
      case delta_Ca_i2 < delta_Ca_ith:
        0.0{per_ms};
      otherwise:
        G_rel_max;
    endsel;
    i_up = I_up*Cai/(Cai+K_mup);
    i_leak = K_leak*Ca_NSR;
    K_leak = I_up/Ca_NSR_max;
    i_tr = (Ca_NSR-Ca_JSR)/tau_tr;
  enddef;

  def comp ionic_concentrations as
    var Nai: mM {init: 10.0, pub: out};
    var Nao: mM {init: 140.0, pub: out};
    var Cai: mM {init: 0.12e-3, pub: out};
    var Cao: mM {init: 1.8, pub: out};
    var Ki: mM {init: 145.0, pub: out};
    var Ko: mM {init: 5.4, pub: out};
    var Ca_JSR: mM {init: 1.8, pub: out};
    var Ca_NSR: mM {init: 1.8, pub: out};
    var Am: per_mm {init: 200};
    var V_myo: dimensionless {init: 0.68};
    var V_JSR: dimensionless {init: 0.0048};
    var V_NSR: dimensionless {init: 0.0552};
    var time: ms {pub: in};
    var F: faradays_constant_units {pub: in};
    var i_Na: uA_per_mm2 {pub: in};
    var i_CaNa: uA_per_mm2 {pub: in};
    var i_Na_b: uA_per_mm2 {pub: in};
    var i_ns_Na: uA_per_mm2 {pub: in};
    var i_NaCa: uA_per_mm2 {pub: in};
    var i_NaK: uA_per_mm2 {pub: in};
    var i_CaCa: uA_per_mm2 {pub: in};
    var i_CaK: uA_per_mm2 {pub: in};
    var i_p_Ca: uA_per_mm2 {pub: in};
    var i_Ca_b: uA_per_mm2 {pub: in};
    var i_K: uA_per_mm2 {pub: in};
    var i_K1: uA_per_mm2 {pub: in};
    var i_Kp: uA_per_mm2 {pub: in};
    var i_ns_K: uA_per_mm2 {pub: in};
    var i_tr: mM_per_ms {pub: in};
    var i_rel: mM_per_ms {pub: in};
    var i_leak: mM_per_ms {pub: in};
    var i_up: mM_per_ms {pub: in};
    ode(Nai, time) = -0{dimensionless}*(i_Na+i_CaNa+i_Na_b+i_ns_Na+i_NaCa*3.0{dimensionless}+i_NaK*3.0{dimensionless})*Am/(V_myo*F);
    ode(Cai, time) = -(i_CaCa+i_p_Ca+i_Ca_b-i_NaCa)*Am/(2.0{dimensionless}*V_myo*F)+i_rel*V_JSR/V_myo+(i_leak-i_up)*V_NSR/V_myo;
    ode(Ki, time) = -(i_CaK+i_K+i_K1+i_Kp+i_ns_K+(-i_NaK*2.0{dimensionless}))*Am/(V_myo*F);
    ode(Ca_JSR, time) = -(i_rel-i_tr*V_NSR/V_JSR);
    ode(Ca_NSR, time) = -(i_leak+i_tr-i_up);
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f_Ca_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_X_gate;
      comp time_dependent_potassium_current_Xi_gate;
    endcomp;
    comp time_independent_potassium_current incl
      comp time_independent_potassium_current_K1_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between plateau_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between non_specific_calcium_activated_current and environment for
    vars time and time;
  enddef;
  def map between ionic_concentrations and environment for
    vars time and time;
  enddef;
  def map between calcium_fluxes_in_the_SR and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_dependent_potassium_current for
    vars V and V;
    vars i_K and i_K;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and Na_Ca_exchanger for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and plateau_potassium_current for
    vars V and V;
    vars i_Kp and i_Kp;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_Ca_b and i_Ca_b;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and non_specific_calcium_activated_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_ns_Ca and i_ns_Ca;
  enddef;
  def map between membrane and ionic_concentrations for
    vars F and F;
  enddef;
  def map between fast_sodium_current and ionic_concentrations for
    vars i_Na and i_Na;
    vars Nao and Nao;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between L_type_Ca_channel and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_CaCa and i_CaCa;
    vars i_CaNa and i_CaNa;
    vars i_CaK and i_CaK;
  enddef;
  def map between time_dependent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars Nao and Nao;
    vars Nai and Nai;
    vars i_K and i_K;
  enddef;
  def map between Na_Ca_exchanger and ionic_concentrations for
    vars Cai and Cai;
    vars Nai and Nai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between time_independent_potassium_current and ionic_concentrations for
    vars Ki and Ki;
    vars Ko and Ko;
    vars i_K1 and i_K1;
  enddef;
  def map between plateau_potassium_current and time_independent_potassium_current for
    vars E_K1 and E_K1;
  enddef;
  def map between plateau_potassium_current and ionic_concentrations for
    vars i_Kp and i_Kp;
  enddef;
  def map between sarcolemmal_calcium_pump and ionic_concentrations for
    vars i_p_Ca and i_p_Ca;
    vars Cai and Cai;
  enddef;
  def map between sodium_background_current and ionic_concentrations for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Nai and Nai;
    vars Nao and Nao;
    vars Ko and Ko;
    vars i_NaK and i_NaK;
  enddef;
  def map between non_specific_calcium_activated_current and ionic_concentrations for
    vars Cai and Cai;
    vars Cao and Cao;
    vars Nao and Nao;
    vars Nai and Nai;
    vars Ko and Ko;
    vars Ki and Ki;
    vars i_ns_Na and i_ns_Na;
    vars i_ns_K and i_ns_K;
  enddef;
  def map between calcium_fluxes_in_the_SR and ionic_concentrations for
    vars i_rel and i_rel;
    vars i_tr and i_tr;
    vars i_leak and i_leak;
    vars i_up and i_up;
    vars Cai and Cai;
    vars Ca_JSR and Ca_JSR;
    vars Ca_NSR and Ca_NSR;
  enddef;
  def map between L_type_Ca_channel and non_specific_calcium_activated_current for
    vars gamma_Nao and gamma_Nao;
    vars gamma_Nai and gamma_Nai;
    vars gamma_Ko and gamma_Ko;
    vars gamma_Ki and gamma_Ki;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_Ca_gate for
    vars f_Ca and f_Ca;
    vars time and time;
    vars Cai and Cai;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_X_gate for
    vars X and X;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_Xi_gate for
    vars Xi and Xi;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_independent_potassium_current and time_independent_potassium_current_K1_gate for
    vars K1_infinity and K1_infinity;
    vars E_K1 and E_K1;
    vars time and time;
    vars V and V;
  enddef;
enddef;
