// This CellML file was generated on 17/03/2016 at 17:32:27 using:
//
// COR (0.9.31.1409)
// Copyright 2002-2016 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
def model Morotti_2012 as
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_mV as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
  def unit per_V_per_s as
    unit volt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit s_per_V as
    unit second;
    unit volt {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit molar {pref: milli};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit F_per_m2 as
    unit farad;
    unit m2 {expo: -1};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit m3_per_s as
    unit m3;
    unit second {expo: -1};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit J_per_moleK as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit C_per_Fm as
    unit coulomb;
    unit farad {expo: -1};
    unit metre {expo: -1};
  enddef;
  def unit m3mM_per_s as
    unit metre {expo: 3};
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {pref: micro, expo: -1};
  enddef;
  def unit pA_per_pF as
    unit ampere {pref: pico};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit per_mM_per_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mM_per_V as
    unit mM;
    unit volt {expo: -1};
  enddef;
  def unit per_mMsq_per_s as
    unit mM {expo: -2};
    unit second {expo: -1};
  enddef;

  def comp Environment as
    var time: second {pub: out};
    var R: J_per_moleK {init: 8.314, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485, pub: out};
    var spefcapica: F_per_m2 {init: 0.01, pub: out};
    var Ko: mM {init: 5.4, pub: out};
    var Ki: mM {init: 135, pub: out};
    var Cli: mM {init: 15};
    var Clo: mM {init: 150};
    var Mgi: mM {init: 1, pub: out};
    var Cao: mM {init: 1.8, pub: out};
    var Nao: mM {init: 140, pub: out};
    var FonRT: per_V {pub: out};
    var cell_length: metre {init: 100e-6};
    var cell_radius: metre {init: 10.25e-6};
    var JCajSL: m3_per_s {pub: out};
    var JCaSLcyt: m3_per_s {pub: out};
    var JNajSL: m3_per_s {pub: out};
    var JNaSLcyt: m3_per_s {pub: out};
    var Vtot: m3 {pub: out};
    var Vcyt: m3 {pub: out};
    var VSL: m3 {pub: out};
    var Vjct: m3 {pub: out};
    var VSR: m3 {pub: out};
    var capacitance: farad;
    var AgTOT: m2;
    var spefcap: F_per_m2 {init: 0.01945};
    var FS1jCa: mM_per_V {pub: out};
    var FS1SLCa: mM_per_V {pub: out};
    var FS1Ca: mM_per_V {pub: out};
    var FS2jCa: per_m3 {pub: out};
    var FS2SLCa: per_m3 {pub: out};
    var FS3SLCa: per_m3 {pub: out};
    var FS3cytCa: per_m3 {pub: out};
    var FS1jNa: mM_per_V {pub: out};
    var FS1SLNa: mM_per_V {pub: out};
    var FS1Na: mM_per_V {pub: out};
    var FS2jNa: per_m3 {pub: out};
    var FS2SLNa: per_m3 {pub: out};
    var FS3SLNa: per_m3 {pub: out};
    var FS3cytNa: per_m3 {pub: out};
    var FSSRcyt: dimensionless {pub: out};
    var FSSRj: dimensionless {pub: out};
    var EK: volt {pub: out};
    var ECl: volt {pub: out};
    FonRT = F/(R*T);
    JCajSL = 1{m3}/1.2134e12{second};
    JCaSLcyt = 1{m3}/2.6851e11{second};
    JNajSL = 1{m3}/(1.6382e12{dimensionless}/3{dimensionless}*100{second});
    JNaSLcyt = 1{m3}/(1.8308e10{dimensionless}/3{dimensionless}*100{second});
    Vtot = pi*sqr(cell_radius)*cell_length;
    Vcyt = Vtot*65{dimensionless}/100{dimensionless};
    VSL = Vtot*2{dimensionless}/100{dimensionless};
    Vjct = Vtot*0.0539{dimensionless}/100{dimensionless};
    VSR = Vtot*3.5{dimensionless}/100{dimensionless};
    AgTOT = 2{dimensionless}*pi*cell_radius*cell_length+2{dimensionless}*pi*sqr(cell_radius);
    capacitance = spefcap*AgTOT;
    FS1jNa = capacitance/F/Vjct;
    FS1SLNa = capacitance/F/VSL;
    FS1Na = capacitance/F/Vtot;
    FS2jNa = 1{dimensionless}/Vjct;
    FS2SLNa = 1{dimensionless}/VSL;
    FS3SLNa = 1{dimensionless}/VSL;
    FS3cytNa = 1{dimensionless}/Vcyt;
    FS1jCa = capacitance/2{dimensionless}/F/Vjct;
    FS1SLCa = capacitance/2{dimensionless}/F/VSL;
    FS1Ca = capacitance/2{dimensionless}/F/Vtot;
    FS2jCa = 1{dimensionless}/Vjct;
    FS2SLCa = 1{dimensionless}/VSL;
    FS3SLCa = 1{dimensionless}/VSL;
    FS3cytCa = 1{dimensionless}/Vcyt;
    FSSRcyt = Vcyt/VSR;
    FSSRj = Vjct/VSR;
    EK = R*T/F*ln(Ko/Ki);
    ECl = -R*T/F*ln(Clo/Cli);
  enddef;

  def comp IonicFluxes as
    var time: second {pub: in};
    var FS1SLNa: mM_per_V {pub: in};
    var FS2SLNa: per_m3 {pub: in};
    var FS3SLNa: per_m3 {pub: in};
    var FS1jNa: mM_per_V {pub: in};
    var FS2jNa: per_m3 {pub: in};
    var FS3cytNa: per_m3 {pub: in};
    var Ikp: A_per_F {pub: in};
    var INa: A_per_F {pub: in};
    var INaj: A_per_F {pub: in};
    var INaBk: A_per_F {pub: in};
    var INaBkj: A_per_F {pub: in};
    var INaK: A_per_F {pub: in};
    var INaKj: A_per_F {pub: in};
    var INaCa: A_per_F {pub: in};
    var INaCaj: A_per_F {pub: in};
    var Ikr: A_per_F {pub: in};
    var Ik1: A_per_F {pub: in};
    var Iks: A_per_F {pub: in};
    var INaBkSL: A_per_F {pub: in};
    var INaCaSL: A_per_F {pub: in};
    var INaSL: A_per_F {pub: in};
    var INaKSL: A_per_F {pub: in};
    var JNaSLcyt: m3_per_s {pub: in};
    var JNajSL: m3_per_s {pub: in};
    var dNaLSL: mM_per_s {pub: in};
    var dNaLj: mM_per_s {pub: in};
    var ICaBk: A_per_F {pub: in};
    var IClCa: A_per_F {pub: in};
    var IClBk: A_per_F {pub: in};
    var ICaL: A_per_F {pub: in};
    var Itof: A_per_F {pub: in};
    var Itos: A_per_F {pub: in};
    var ISLCaP: A_per_F {pub: in};
    var Itotal: A_per_F;
    var dNac: mM_per_s;
    var dNaSL: mM_per_s;
    var dNaj: mM_per_s;
    var stim_period: second {init: 1};
    var stim_amplitude: A_per_F {init: 15};
    var stim_duration: second {init: 3e-3};
    var stim_offset: second {init: 0};
    var past: second;
    var i_Stim: A_per_F;
    var V: volt {init: -85.7e-3, pub: out};
    var slo: dimensionless {init: 1, pub: out};
    var JNaj_SL: m3mM_per_s;
    var JNaSL_c: m3mM_per_s;
    var NaSL: mM {init: 8.80733, pub: out};
    var Naj: mM {init: 8.80329, pub: out};
    var Nac: mM {init: 8.80853, pub: out};
    past = floor(time/stim_period)*stim_period;
    i_Stim = sel
      case (time-past >= stim_offset) and (time-past <= stim_offset+stim_duration):
        stim_amplitude;
      otherwise:
        0{A_per_F};
    endsel;
    Itotal = -(Ikp+INa+INaBk+INaK+Ikr+Iks+Itos+Itof+Ik1+ISLCaP+INaCa+ICaL+ICaBk+IClCa+IClBk-i_Stim);
    ode(V, time) = Itotal;
    dNac = FS3cytNa*JNaSL_c;
    ode(Nac, time) = dNac;
    dNaj = -FS1jNa*(INaj+3{dimensionless}*INaCaj+INaBkj+3{dimensionless}*INaKj+INaj)-dNaLj-JNaj_SL*FS2jNa;
    ode(Naj, time) = dNaj;
    dNaSL = -FS1SLNa*(INa+3{dimensionless}*INaCaSL+INaBkSL+3{dimensionless}*INaKSL+INaSL)-dNaLSL+JNaj_SL*FS2SLNa-JNaSL_c*FS3SLNa;
    ode(NaSL, time) = dNaSL;
    JNaj_SL = JNajSL*(Naj-NaSL);
    JNaSL_c = JNaSLcyt*(NaSL-Nac);
  enddef;

  def comp Poj as
    var Caj: mM {pub: in};
    var V: volt {pub: in};
    var time: second {pub: in};
    var c1: dimensionless {init: 5.3578e-6};
    var c2: dimensionless {init: 0.9995};
    var xi1ca: dimensionless {init: 1.2429e-7};
    var xi1ba: dimensionless {init: 3.0319e-5};
    var xi2ca: dimensionless {init: 1.7544e-6};
    var xi2ba: dimensionless {init: 4.263e-4};
    var aff: dimensionless {init: 1};
    var cpt: mM {init: 3.75e-3};
    var cat: mM {init: 7.617e-3};
    var s1o: per_s {init: 0.0182688e3};
    var k1o: per_s {init: 0.024168e3};
    var k2o: per_s {init: 0.000103615e3};
    var sp0: dimensionless {init: 1.5};
    var sp1: second {init: 3e-3};
    var sp2: volt {init: 40e-3};
    var sp3: volt {init: 3e-3};
    var sp4: volt {init: 4e-3};
    var sp5: volt {init: 11.32e-3};
    var sp6: volt {init: 15.6e-3};
    var sp7: second {init: 10e-3};
    var sp8: second {init: 4954e-3};
    var sp9: second {init: 78.0329};
    var sp10: second {init: 0.1};
    var aR2: dimensionless {init: 1};
    var sR2: volt {init: -0.002};
    var pR2: per_V {init: 145};
    var aT2: second {init: 0.001};
    var sT2: volt {init: -1};
    var pT2: per_V {init: 100};
    var aR1: dimensionless {init: 0.09091};
    var sR1: volt {init: -1};
    var pR1: per_V {init: 100};
    var aT1: second {init: 0.00030303};
    var sT1: volt {init: -1};
    var pT1: per_V {init: 100};
    var aRv2: dimensionless {init: 0.9};
    var sRv2: volt {init: -0.029};
    var pRv2: per_V {init: 135};
    var aTv2: second {init: 0.5};
    var sTv2: volt {init: -0.025};
    var pTv2: per_V {init: 50};
    var aRv1: dimensionless {init: 0.85};
    var sRv1: volt {init: -0.18};
    var pRv1: per_V {init: 90};
    var aTv1: second {init: 0.27};
    var sTv1: volt {init: -0.18};
    var pTv1: per_V {init: 100};
    var aTrev1: second {init: 0.20512};
    var sTrev1: volt {init: -0.065};
    var pTrev1: per_V {init: 100};
    var aTrev2: second {init: 7e5};
    var sTrev2: volt {init: 0.06};
    var pTrev2: per_V {init: 130};
    var alpha: per_s;
    var beta: per_s;
    var R2: dimensionless;
    var T2: second;
    var k1: per_s;
    var k2: per_s;
    var k3: per_s;
    var k4: per_s;
    var k5: per_s;
    var k6: per_s;
    var fcp: dimensionless;
    var tauca: second;
    var TAUca: second;
    var RV: second;
    var Pq: dimensionless;
    var Pr: dimensionless;
    var Ps: dimensionless;
    var Rv1: dimensionless;
    var Tv1: second;
    var Frev1: dimensionless;
    var Trev1: second;
    var Frev2: dimensionless;
    var Trev2: second;
    var Rv2: dimensionless;
    var Tv2: second;
    var k1t: per_s;
    var k2t: per_s;
    var k3t: per_s;
    var k4t: per_s;
    var k5t: per_s;
    var k6t: per_s;
    var s1: per_s;
    var s2: per_s;
    var s1t: per_s;
    var s2t: per_s;
    var r1: per_s;
    var r2: per_s;
    var R1: dimensionless;
    var T1: second;
    var Oj: dimensionless {pub: out};
    R2 = aR2/(1{dimensionless}+exp(-(V-sR2)*pR2));
    T2 = aT2/(1{dimensionless}+exp(-(V-sT2)*pT2));
    alpha = R2/T2;
    beta = (1{dimensionless}-R2)/T2;
    k1 = k1o*fcp;
    k2 = k2o;
    k3 = (1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp(-(V+sp2)/sp3)))/sp1;
    k4 = k3*alpha/beta*k1/k2*k5/k6;
    k5 = (1{dimensionless}-Ps)/tauca;
    k6 = fcp*Ps/tauca;
    k1t = Rv1/Tv1;
    k2t = (1{dimensionless}-Rv1)/Tv1;
    k3t = 1{dimensionless}/(Trev2*(1{dimensionless}+Frev2));
    k4t = k3t*Frev2;
    k5t = (1{dimensionless}-Rv2)/Tv2;
    k6t = Rv2/Tv2;
    s1 = fcp*s1o;
    s2 = s1*k2o/k1*r1/r2;
    s1t = 1{dimensionless}/(Trev1*(1{dimensionless}+Frev1));
    s2t = Frev1*s1t;
    r1 = R1/T1;
    r2 = (1{dimensionless}-R1)/T1;
    R1 = aR1/(1{dimensionless}+exp(-(V-sR1)*pR1));
    T1 = aT1/(1{dimensionless}+exp(-(V-sT1)*pT1));
    Rv1 = aRv1/(1{dimensionless}+exp(-(V-sRv1)*pRv1));
    Tv1 = aTv1/(1{dimensionless}+exp(-(V-sTv1)*pTv1));
    Rv2 = aRv2/(1{dimensionless}+exp(-(V-sRv2)*pRv2));
    Tv2 = aTv2/(1{dimensionless}+exp(-(V-sTv2)*pTv2));
    Trev1 = aTrev1/(1{dimensionless}+exp(-(V-sTrev1)*pTrev1));
    Frev1 = (1{dimensionless}-Rv1)/Rv1*R1/(1{dimensionless}-R1);
    Trev2 = aTrev2/(1{dimensionless}+exp(-(V-sTrev2)*pTrev2));
    Frev2 = (1{dimensionless}-Rv2)/Rv2*R2/(1{dimensionless}-R2)*Rv1/(1{dimensionless}-Rv1);
    Ps = 1{dimensionless}/(1{dimensionless}+exp(-(V+sp2)/sp5));
    Pq = 1{dimensionless}+sp0/(1{dimensionless}+exp(-(V+sp2)/sp4));
    tauca = Pq*((RV-TAUca)*Pr+TAUca);
    RV = sp7+sp8*exp(V/sp6);
    Pr = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp(-(V+sp2)/sp4));
    TAUca = (sp9/(1{dimensionless}+pow(Caj*aff/cat, 4{dimensionless}))+sp10)/1000{dimensionless};
    fcp = 1{dimensionless}/(1{dimensionless}+pow(cpt/Caj/aff, 3{dimensionless}));
    Oj = 1{dimensionless}-xi1ca-xi2ca-xi1ba-xi2ba-c1-c2;
    ode(c1, time) = alpha*c2+k2*xi1ca+k2t*xi1ba+r2*Oj-(beta+r1+k1t+k1)*c1;
    ode(c2, time) = beta*c1+k5*xi2ca+k5t*xi2ba-(k6+k6t+alpha)*c2;
    ode(xi1ca, time) = k1*c1+k4*xi2ca+s1*Oj-(k3+k2+s2)*xi1ca;
    ode(xi1ba, time) = k1t*c1+k4t*xi2ba+s1t*Oj-(k3t+k2t+s2t)*xi1ba;
    ode(xi2ca, time) = k3*xi1ca+k6*c2-(k5+k4)*xi2ca;
    ode(xi2ba, time) = k3t*xi1ba+k6t*c2-(k5t+k4t)*xi2ba;
  enddef;

  def comp PoSL as
    var CaSL: mM {pub: in};
    var V: volt {pub: in};
    var time: second {pub: in};
    var c1: dimensionless {init: 5.3578e-6};
    var c2: dimensionless {init: 0.9995};
    var xi1ca: dimensionless {init: 2.6032e-8};
    var xi1ba: dimensionless {init: 3.0319e-5};
    var xi2ca: dimensionless {init: 3.6746e-7};
    var xi2ba: dimensionless {init: 4.263e-4};
    var aff: dimensionless {init: 1};
    var cpt: mM {init: 3.75e-3};
    var cat: mM {init: 7.617e-3};
    var s1o: per_s {init: 0.0182688e3};
    var k1o: per_s {init: 0.024168e3};
    var k2o: per_s {init: 0.000103615e3};
    var sp0: dimensionless {init: 1.5};
    var sp1: second {init: 3e-3};
    var sp2: volt {init: 40e-3};
    var sp3: volt {init: 3e-3};
    var sp4: volt {init: 4e-3};
    var sp5: volt {init: 11.32e-3};
    var sp6: volt {init: 15.6e-3};
    var sp7: second {init: 10e-3};
    var sp8: second {init: 4954e-3};
    var sp9: second {init: 78.0329};
    var sp10: second {init: 0.1};
    var aR2: dimensionless {init: 1};
    var sR2: volt {init: -0.002};
    var pR2: per_V {init: 145};
    var aT2: second {init: 0.001};
    var sT2: volt {init: -1};
    var pT2: per_V {init: 100};
    var aR1: dimensionless {init: 0.09091};
    var sR1: volt {init: -1};
    var pR1: per_V {init: 100};
    var aT1: second {init: 0.00030303};
    var sT1: volt {init: -1};
    var pT1: per_V {init: 100};
    var aRv2: dimensionless {init: 0.9};
    var sRv2: volt {init: -0.029};
    var pRv2: per_V {init: 135};
    var aTv2: second {init: 0.5};
    var sTv2: volt {init: -0.025};
    var pTv2: per_V {init: 50};
    var aRv1: dimensionless {init: 0.85};
    var sRv1: volt {init: -0.18};
    var pRv1: per_V {init: 90};
    var aTv1: second {init: 0.27};
    var sTv1: volt {init: -0.18};
    var pTv1: per_V {init: 100};
    var aTrev1: second {init: 0.20512};
    var sTrev1: volt {init: -0.065};
    var pTrev1: per_V {init: 100};
    var aTrev2: second {init: 7e5};
    var sTrev2: volt {init: 0.06};
    var pTrev2: per_V {init: 130};
    var alpha: per_s;
    var beta: per_s;
    var R2: dimensionless;
    var T2: second;
    var k1: per_s;
    var k2: per_s;
    var k3: per_s;
    var k4: per_s;
    var k5: per_s;
    var k6: per_s;
    var fcp: dimensionless;
    var tauca: second;
    var TAUca: second;
    var RV: second;
    var Pq: dimensionless;
    var Pr: dimensionless;
    var Ps: dimensionless;
    var Rv1: dimensionless;
    var Tv1: second;
    var Frev1: dimensionless;
    var Trev1: second;
    var Frev2: dimensionless;
    var Trev2: second;
    var Rv2: dimensionless;
    var Tv2: second;
    var k1t: per_s;
    var k2t: per_s;
    var k3t: per_s;
    var k4t: per_s;
    var k5t: per_s;
    var k6t: per_s;
    var s1: per_s;
    var s2: per_s;
    var s1t: per_s;
    var s2t: per_s;
    var r1: per_s;
    var r2: per_s;
    var R1: dimensionless;
    var T1: second;
    var OSL: dimensionless {pub: out};
    R2 = aR2/(1{dimensionless}+exp(-(V-sR2)*pR2));
    T2 = aT2/(1{dimensionless}+exp(-(V-sT2)*pT2));
    alpha = R2/T2;
    beta = (1{dimensionless}-R2)/T2;
    k1 = k1o*fcp;
    k2 = k2o;
    k3 = (1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp(-(V+sp2)/sp3)))/sp1;
    k4 = k3*alpha/beta*k1/k2*k5/k6;
    k5 = (1{dimensionless}-Ps)/tauca;
    k6 = fcp*Ps/tauca;
    k1t = Rv1/Tv1;
    k2t = (1{dimensionless}-Rv1)/Tv1;
    k3t = 1{dimensionless}/(Trev2*(1{dimensionless}+Frev2));
    k4t = k3t*Frev2;
    k5t = (1{dimensionless}-Rv2)/Tv2;
    k6t = Rv2/Tv2;
    s1 = fcp*s1o;
    s2 = s1*k2o/k1*r1/r2;
    s1t = 1{dimensionless}/(Trev1*(1{dimensionless}+Frev1));
    s2t = Frev1*s1t;
    r1 = R1/T1;
    r2 = (1{dimensionless}-R1)/T1;
    R1 = aR1/(1{dimensionless}+exp(-(V-sR1)*pR1));
    T1 = aT1/(1{dimensionless}+exp(-(V-sT1)*pT1));
    Rv1 = aRv1/(1{dimensionless}+exp(-(V-sRv1)*pRv1));
    Tv1 = aTv1/(1{dimensionless}+exp(-(V-sTv1)*pTv1));
    Rv2 = aRv2/(1{dimensionless}+exp(-(V-sRv2)*pRv2));
    Tv2 = aTv2/(1{dimensionless}+exp(-(V-sTv2)*pTv2));
    Trev1 = aTrev1/(1{dimensionless}+exp(-(V-sTrev1)*pTrev1));
    Frev1 = (1{dimensionless}-Rv1)/Rv1*R1/(1{dimensionless}-R1);
    Trev2 = aTrev2/(1{dimensionless}+exp(-(V-sTrev2)*pTrev2));
    Frev2 = (1{dimensionless}-Rv2)/Rv2*R2/(1{dimensionless}-R2)*Rv1/(1{dimensionless}-Rv1);
    Ps = 1{dimensionless}/(1{dimensionless}+exp(-(V+sp2)/sp5));
    Pq = 1{dimensionless}+sp0/(1{dimensionless}+exp(-(V+sp2)/sp4));
    tauca = Pq*((RV-TAUca)*Pr+TAUca);
    RV = sp7+sp8*exp(V/sp6);
    Pr = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp(-(V+sp2)/sp4));
    TAUca = (sp9/(1{dimensionless}+pow(CaSL*aff/cat, 4{dimensionless}))+sp10)/1000{dimensionless};
    fcp = 1{dimensionless}/(1{dimensionless}+pow(cpt/CaSL/aff, 3{dimensionless}));
    OSL = 1{dimensionless}-xi1ca-xi2ca-xi1ba-xi2ba-c1-c2;
    ode(c1, time) = alpha*c2+k2*xi1ca+k2t*xi1ba+r2*OSL-(beta+r1+k1t+k1)*c1;
    ode(c2, time) = beta*c1+k5*xi2ca+k5t*xi2ba-(k6+k6t+alpha)*c2;
    ode(xi1ca, time) = k1*c1+k4*xi2ca+s1*OSL-(k3+k2+s2)*xi1ca;
    ode(xi1ba, time) = k1t*c1+k4t*xi2ba+s1t*OSL-(k3t+k2t+s2t)*xi1ba;
    ode(xi2ca, time) = k3*xi1ca+k6*c2-(k5+k4)*xi2ca;
    ode(xi2ba, time) = k3t*xi1ba+k6t*c2-(k5t+k4t)*xi2ba;
  enddef;

  def comp ICaL as
    var Caj: mM {pub: in};
    var CaSL: mM {pub: in};
    var Naj: mM {pub: in};
    var NaSL: mM {pub: in};
    var Oj: dimensionless {pub: in};
    var OSL: dimensionless {pub: in};
    var V: volt {pub: in};
    var R: J_per_moleK {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cao: mM {pub: in};
    var Nao: mM {pub: in};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var spefcapica: F_per_m2 {pub: in};
    var Pca: m_per_s {init: 39.609e-6};
    var gammaCao: dimensionless {init: 0.341};
    var gammaCai: dimensionless {init: 0.0341};
    var Pna: m_per_s {init: 1.10025e-9};
    var gammaNai: dimensionless {init: 0.75};
    var gammaNao: dimensionless {init: 0.75};
    var Pk: m_per_s {init: 19.8045e-9};
    var gammaKi: dimensionless {init: 0.75};
    var gammaKo: dimensionless {init: 0.75};
    var Vca_sing: volt;
    var ICAj: C_per_Fm;
    var ICASL: C_per_Fm;
    var DFicalj: A_per_F;
    var DFicalSL: A_per_F;
    var Vna_sing: volt;
    var INAj: C_per_Fm;
    var INASL: C_per_Fm;
    var DFinaj: A_per_F;
    var DFinaSL: A_per_F;
    var Vk_sing: C_per_Fm;
    var DFik: A_per_F;
    var FxCaLj: dimensionless {init: 0.9};
    var FxCaLSL: dimensionless {init: 0.1};
    var Icaltotj: A_per_F;
    var IcaltotSL: A_per_F;
    var ICaL: A_per_F {pub: out};
    var ICaLSL: A_per_F {pub: out};
    var ICaLj: A_per_F {pub: out};
    var INaSL: A_per_F {pub: out};
    var INaj: A_per_F {pub: out};
    Vca_sing = sel
      case abs(V) >= 1e-12{volt}:
        V/(exp(2{dimensionless}*V*F/R/T)-1{dimensionless});
      otherwise:
        R*T/2{dimensionless}/F;
    endsel;
    Vna_sing = sel
      case abs(V) >= 1e-12{volt}:
        V/(exp(V*F/R/T)-1{dimensionless});
      otherwise:
        R*T/F;
    endsel;
    Vk_sing = sel
      case abs(V) >= 1e-12{volt}:
        V*sqr(F)/R/T*(gammaKi*Ki*exp(V*F/R/T)-gammaKo*Ko)/(exp(V*F/R/T)-1{dimensionless})/spefcapica;
      otherwise:
        R*T/F*sqr(F)/R/T*(gammaKi*Ki-gammaKo*Ko)/spefcapica;
    endsel;
    ICAj = Vca_sing*4{dimensionless}*sqr(F)/R/T*(gammaCai*Caj*exp(2{dimensionless}*V*F/R/T)-gammaCao*Cao)/spefcapica;
    ICASL = Vca_sing*4{dimensionless}*sqr(F)/R/T*(gammaCai*CaSL*exp(2{dimensionless}*V*F/R/T)-gammaCao*Cao)/spefcapica;
    DFicalj = Pca*ICAj;
    DFicalSL = Pca*ICASL;
    INAj = Vna_sing*sqr(F)/R/T*(gammaNai*Naj*exp(V*F/R/T)-gammaNao*Nao)/spefcapica;
    INASL = Vna_sing*sqr(F)/R/T*(gammaNai*NaSL*exp(V*F/R/T)-gammaNao*Nao)/spefcapica;
    DFinaj = Pna*INAj;
    DFinaSL = Pna*INASL;
    DFik = Pk*Vk_sing;
    Icaltotj = FxCaLj*Oj*(DFicalj+DFinaj+DFik);
    IcaltotSL = FxCaLSL*OSL*(DFicalSL+DFinaSL+DFik);
    ICaL = Icaltotj+IcaltotSL;
    ICaLSL = FxCaLSL*OSL*DFicalSL;
    ICaLj = FxCaLj*Oj*DFicalj;
    INaSL = FxCaLSL*OSL*DFinaSL;
    INaj = FxCaLj*Oj*DFinaj;
  enddef;

  def comp CaDynamics as
    var time: second {pub: in};
    var Vcyt: m3 {pub: in};
    var Vjct: m3 {pub: in};
    var FS1SLCa: mM_per_V {pub: in};
    var FS2SLCa: per_m3 {pub: in};
    var FS3SLCa: per_m3 {pub: in};
    var FS1jCa: mM_per_V {pub: in};
    var FS2jCa: per_m3 {pub: in};
    var FSSRj: dimensionless {pub: in};
    var FS3cytCa: per_m3 {pub: in};
    var FSSRcyt: dimensionless {pub: in};
    var ISRCaP: mM_per_s {pub: in};
    var INaCaSL: A_per_F {pub: in};
    var ICaLSL: A_per_F {pub: in};
    var ICaBkSL: A_per_F {pub: in};
    var ISLCaPSL: A_per_F {pub: in};
    var INaCaj: A_per_F {pub: in};
    var ICaLj: A_per_F {pub: in};
    var ICaBkj: A_per_F {pub: in};
    var ISLCaPj: A_per_F {pub: in};
    var JCajSL: m3_per_s {pub: in};
    var JCaSLcyt: m3_per_s {pub: in};
    var JSRCaRel: mM_per_s {pub: in};
    var JSRLeak: mM_per_s {pub: in};
    var dcsqn: mM_per_s {pub: in};
    var dtpn: mM_per_s {pub: in};
    var dtpnCa: mM_per_s {pub: in};
    var dtpnMg: mM_per_s {pub: in};
    var dcmdn: mM_per_s {pub: in};
    var dmysCa: mM_per_s {pub: in};
    var dmysMg: mM_per_s {pub: in};
    var dSR: mM_per_s {pub: in};
    var dSLSL: mM_per_s {pub: in};
    var dSLHighSL: mM_per_s {pub: in};
    var dSLj: mM_per_s {pub: in};
    var dSLHighj: mM_per_s {pub: in};
    var CaSL: mM {init: 1.031812e-4, pub: out};
    var CaSR: mM {init: 5.545201e-1, pub: out};
    var Caj: mM {init: 1.737475e-4, pub: out};
    var Cac: mM {init: 8.597401e-5, pub: out};
    var NaSL: mM {pub: in};
    var Naj: mM {pub: in};
    var JCaj_SL: m3mM_per_s;
    var JCaSL_c: m3mM_per_s;
    var BufCyt: mM_per_s;
    var dCac: mM_per_s;
    var dCaSR: mM_per_s;
    var dCaSL: mM_per_s;
    var dCaj: mM_per_s;
    JCaj_SL = JCajSL*(Caj-CaSL);
    JCaSL_c = JCaSLcyt*(CaSL-Cac);
    dCaSL = FS1SLCa*(2{dimensionless}*INaCaSL-ICaLSL-ICaBkSL-ISLCaPSL)-(dSLSL+dSLHighSL)-JCaSL_c*FS3SLCa+JCaj_SL*FS2SLCa;
    ode(CaSL, time) = dCaSL;
    dCaSR = -(JSRLeak*FSSRcyt+JSRCaRel)+ISRCaP-dcsqn;
    ode(CaSR, time) = dCaSR;
    BufCyt = dtpn+dtpnCa+dtpnMg+dcmdn+dmysCa+dmysMg+dSR;
    dCac = FS3cytCa*JCaSL_c-ISRCaP/FSSRcyt-BufCyt;
    ode(Cac, time) = dCac;
    dCaj = FS1jCa*(2{dimensionless}*INaCaj-ICaLj-ICaBkj-ISLCaPj)-(dSLj+dSLHighj)-JCaj_SL*FS2jCa+JSRLeak*Vcyt/Vjct+JSRCaRel/FSSRj;
    ode(Caj, time) = dCaj;
  enddef;

  def comp INaCa as
    var INaCa: A_per_F {pub: out};
    var INaCaSL: A_per_F {pub: out};
    var INaCaj: A_per_F {pub: out};
    var VmaxNaCa: A_per_F {init: 8.46};
    var KmNaix: mM {init: 12.29};
    var KmCao: mM {init: 1.3};
    var KmNao: mM {init: 87.5};
    var KmCai: mM {init: 0.00359};
    var Kdact: mM {init: 0.000256};
    var ksat: dimensionless {init: 0.27};
    var eta: dimensionless {init: 0.35};
    var HNa: dimensionless {init: 3};
    var V: volt {pub: in};
    var R: J_per_moleK {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var NaSL: mM {pub: in};
    var Naj: mM {pub: in};
    var Nao: mM {pub: in};
    var CaSL: mM {pub: in};
    var Caj: mM {pub: in};
    var Cao: mM {pub: in};
    INaCaSL = 1{dimensionless}/(1{dimensionless}+pow(Kdact/CaSL, 3{dimensionless}))*0.89{dimensionless}*VmaxNaCa*(exp(eta*V*F/R/T)*pow(NaSL, HNa)*Cao-pow(Nao, HNa)*CaSL*exp((eta-1{dimensionless})*V*F/R/T))/(1{dimensionless}+ksat*exp((eta-1{dimensionless})*V*F/R/T))/(KmCai*pow(Nao, HNa)*(1{dimensionless}+pow(NaSL/KmNaix, HNa))+pow(KmNao, HNa)*CaSL*(1{dimensionless}+CaSL/KmCai)+KmCao*pow(NaSL, HNa)+pow(NaSL, HNa)*Cao+pow(Nao, HNa)*CaSL);
    INaCaj = 1{dimensionless}/(1{dimensionless}+pow(Kdact/Caj, 3{dimensionless}))*0.11{dimensionless}*VmaxNaCa*(exp(eta*V*F/R/T)*pow(Naj, HNa)*Cao-pow(Nao, HNa)*Caj*exp((eta-1{dimensionless})*V*F/R/T))/(1{dimensionless}+ksat*exp((eta-1{dimensionless})*V*F/R/T))/(KmCai*pow(Nao, HNa)*(1{dimensionless}+pow(Naj/KmNaix, HNa))+pow(KmNao, HNa)*Caj*(1{dimensionless}+Caj/KmCai)+KmCao*pow(Naj, HNa)+pow(Naj, HNa)*Cao+pow(Nao, HNa)*Caj);
    INaCa = INaCaj+INaCaSL;
  enddef;

  def comp ICaBk as
    var ICaBk: A_per_F {pub: out};
    var ICaBkSL: A_per_F {pub: out};
    var ICaBkj: A_per_F {pub: out};
    var CaSL: mM {pub: in};
    var Caj: mM {pub: in};
    var Cao: mM {pub: in};
    var V: volt {pub: in};
    var R: J_per_moleK {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var GCaBkmax: S_per_F {init: 0.2513};
    var FxCaBkj: dimensionless {init: 0.11};
    var FxCaBkSL: dimensionless {init: 0.89};
    var ECaSL: volt;
    var ECaj: volt;
    ECaSL = R*T/2{dimensionless}/F*ln(Cao/CaSL);
    ECaj = R*T/2{dimensionless}/F*ln(Cao/Caj);
    ICaBkSL = FxCaBkSL*GCaBkmax*(V-ECaSL);
    ICaBkj = FxCaBkj*GCaBkmax*(V-ECaj);
    ICaBk = ICaBkSL+ICaBkj;
  enddef;

  def comp ISLCaP as
    var ISLCaP: A_per_F {pub: out};
    var ISLCaPSL: A_per_F {pub: out};
    var ISLCaPj: A_per_F {pub: out};
    var CaSL: mM {pub: in};
    var Caj: mM {pub: in};
    var FxSLCaPj: dimensionless {init: 0.11};
    var FxSLCaPSL: dimensionless {init: 0.89};
    var VmaxSLCaP: A_per_F {init: 0.0673};
    var KmSLCaP: mM {init: 0.5e-3};
    var HSLCaP: dimensionless {init: 1.6};
    ISLCaPSL = FxSLCaPSL*VmaxSLCaP/(1{dimensionless}+pow(KmSLCaP/CaSL, HSLCaP));
    ISLCaPj = FxSLCaPj*VmaxSLCaP/(1{dimensionless}+pow(KmSLCaP/Caj, HSLCaP));
    ISLCaP = ISLCaPSL+ISLCaPj;
  enddef;

  def comp ISRCaP as
    var CaSR: mM {pub: in};
    var Cac: mM {pub: in};
    var VmaxSRCaP: mM_per_s {init: 4.939602};
    var Kmf: mM {init: 0.246e-3};
    var Kmr: mM {init: 1.7};
    var HSRCaP: dimensionless {init: 1.787};
    var ISRCaP: mM_per_s {pub: out};
    ISRCaP = (VmaxSRCaP*pow(Cac/Kmf, HSRCaP)-VmaxSRCaP*pow(CaSR/Kmr, HSRCaP))/(1{dimensionless}+pow(Cac/Kmf, HSRCaP)+pow(CaSR/Kmr, HSRCaP));
  enddef;

  def comp JSRLeak as
    var CaSR: mM {pub: in};
    var Caj: mM {pub: in};
    var KSRleak: per_s {init: 5.348e-3};
    var JSRLeak: mM_per_s {pub: out};
    JSRLeak = KSRleak*(CaSR-Caj);
  enddef;

  def comp JSRCaRel as
    var time: second {pub: in};
    var Caj: mM {pub: in};
    var CaSR: mM {pub: in};
    var V: volt {pub: in};
    var ks: per_s {init: 44.5e3};
    var koCa: per_mMsq_per_s {init: 10e3};
    var kom: per_s {init: 0.06e3};
    var kiCa: per_mM_per_s {init: 0.5e3};
    var kim: per_s {init: 0.005e3};
    var EC50SR: mM {init: 0.45};
    var MaxSR: dimensionless {init: 15};
    var MinSR: dimensionless {init: 1};
    var HSR: dimensionless {init: 2.5};
    var aRyR: dimensionless {init: 1.5};
    var sRyR: volt {init: 0.03};
    var pRyR: per_V {init: 65};
    var RCaRel: dimensionless {init: 0.8884332};
    var dRCaRel: per_s;
    var OCaRel: dimensionless {init: 8.156628e-7};
    var dOCaRel: per_s;
    var ICaRel: dimensionless {init: 1.024274e-7};
    var dICaRel: per_s;
    var RI: dimensionless;
    var kSRCa: dimensionless;
    var koSRCa: per_mMsq_per_s;
    var kiSRCa: per_mM_per_s;
    var jrel: mM_per_s;
    var JSRCaRel: mM_per_s {pub: out};
    kSRCa = MaxSR-(MaxSR-MinSR)/(1{dimensionless}+pow(EC50SR/CaSR, HSR));
    koSRCa = koCa/kSRCa;
    kiSRCa = kiCa*kSRCa;
    dRCaRel = -koSRCa*sqr(Caj)*RCaRel+kom*OCaRel-kiSRCa*Caj*RCaRel+kim*RI;
    ode(RCaRel, time) = dRCaRel;
    dOCaRel = kim*ICaRel-Caj*kiSRCa*OCaRel+koSRCa*sqr(Caj)*RCaRel-kom*OCaRel;
    ode(OCaRel, time) = dOCaRel;
    dICaRel = kiSRCa*Caj*OCaRel-kim*ICaRel-kom*ICaRel+koSRCa*sqr(Caj)*RI;
    ode(ICaRel, time) = dICaRel;
    RI = 1{dimensionless}-RCaRel-OCaRel-ICaRel;
    jrel = ks*OCaRel*(CaSR-Caj);
    JSRCaRel = jrel*aRyR/(1{dimensionless}+exp((V-sRyR)*pRyR));
  enddef;

  def comp CaBuffer as
    var CaSR: mM {pub: in};
    var CaSL: mM {pub: in};
    var Caj: mM {pub: in};
    var Cac: mM {pub: in};
    var Mgi: mM {pub: in};
    var tpn: mM {init: 8.773191e-3, pub: out};
    var tpnCa: mM {init: 1.078283e-1, pub: out};
    var tpnMg: mM {init: 1.524002e-2, pub: out};
    var cmdn: mM {init: 2.911916e-4, pub: out};
    var mysCa: mM {init: 1.298754e-3, pub: out};
    var mysMg: mM {init: 1.381982e-1, pub: out};
    var SR: mM {init: 2.143165e-3, pub: out};
    var SLSL: mM {init: 1.110363e-1, pub: out};
    var SLj: mM {init: 9.566355e-3, pub: out};
    var SLHighSL: mM {init: 7.297378e-2, pub: out};
    var SLHighj: mM {init: 7.347888e-3, pub: out};
    var csqn: mM {init: 1.242988, pub: out};
    var Bmaxtpn: mM {init: 70e-3};
    var kofftpn: per_s {init: 19.6};
    var kontpn: per_mM_per_s {init: 32.7e3};
    var BmaxtpnCa: mM {init: 140e-3};
    var kofftpnCa: per_s {init: 0.032};
    var kontpnCa: per_mM_per_s {init: 2.37e3};
    var BmaxtpnMg: mM {init: 140e-3};
    var kofftpnMg: per_s {init: 3.33};
    var kontpnMg: per_mM_per_s {init: 3};
    var Bmaxcmdn: mM {init: 24e-3};
    var koffcmdn: per_s {init: 238};
    var koncmdn: per_mM_per_s {init: 34e3};
    var BmaxmysCa: mM {init: 140e-3};
    var koffmysCa: per_s {init: 0.46};
    var konmysCa: per_mM_per_s {init: 13.8e3};
    var BmaxmysMg: mM {init: 140e-3};
    var koffmysMg: per_s {init: 0.057};
    var konmysMg: per_mM_per_s {init: 0.0157e3};
    var BmaxSR: mM {init: 19};
    var koffSR: per_s {init: 60};
    var konSR: per_mM_per_s {init: 100e3};
    var BmaxSLSL: mM {init: 0.0374};
    var BmaxSLj: mM {init: 0.0046};
    var koffSL: per_s {init: 1300};
    var konSL: per_mM_per_s {init: 100e3};
    var BmaxSLHighSL: mM {init: 0.0134};
    var BmaxSLHighj: mM {init: 0.00165};
    var koffSLHigh: per_s {init: 30};
    var konSLHigh: per_mM_per_s {init: 100e3};
    var Bmaxcsqn: mM {init: 0.14};
    var koncsqn: per_mM_per_s {init: 100e3};
    var koffcsqn: per_s {init: 65000};
    var VSR: m3 {pub: in};
    var VSL: m3 {pub: in};
    var Vjct: m3 {pub: in};
    var Vcyt: m3 {pub: in};
    var time: second {pub: in};
    var dSLHighSL: mM_per_s {pub: out};
    var dSLHighj: mM_per_s {pub: out};
    var dSLSL: mM_per_s {pub: out};
    var dSLj: mM_per_s {pub: out};
    var dSR: mM_per_s {pub: out};
    var dmysMg: mM_per_s {pub: out};
    var dmysCa: mM_per_s {pub: out};
    var dcmdn: mM_per_s {pub: out};
    var dtpnMg: mM_per_s {pub: out};
    var dtpnCa: mM_per_s {pub: out};
    var dtpn: mM_per_s {pub: out};
    var dcsqn: mM_per_s {pub: out};
    dcsqn = koncsqn*CaSR*(Bmaxcsqn*Vcyt/VSR-csqn)-koffcsqn*csqn;
    ode(csqn, time) = dcsqn;
    dSLHighj = konSLHigh*Caj*(BmaxSLHighj*Vcyt/Vjct*0.1{dimensionless}-SLHighj)-koffSLHigh*SLHighj;
    ode(SLHighj, time) = dSLHighj;
    dSLj = konSL*Caj*(BmaxSLj*Vcyt/Vjct*0.1{dimensionless}-SLj)-koffSL*SLj;
    ode(SLj, time) = dSLj;
    dSLHighSL = konSLHigh*CaSL*(BmaxSLHighSL*Vcyt/VSL-SLHighSL)-koffSLHigh*SLHighSL;
    ode(SLHighSL, time) = dSLHighSL;
    dSLSL = konSL*CaSL*(BmaxSLSL*Vcyt/VSL-SLSL)-koffSL*SLSL;
    ode(SLSL, time) = dSLSL;
    dSR = konSR*Cac*(BmaxSR*0.9e-3{dimensionless}-SR)-koffSR*SR;
    ode(SR, time) = dSR;
    dmysMg = konmysMg*Mgi*(BmaxmysMg-mysMg-mysCa)-koffmysMg*mysMg;
    ode(mysMg, time) = dmysMg;
    dmysCa = konmysCa*Cac*(BmaxmysCa-mysCa-mysMg)-koffmysCa*mysCa;
    ode(mysCa, time) = dmysCa;
    dcmdn = koncmdn*Cac*(Bmaxcmdn-cmdn)-koffcmdn*cmdn;
    ode(cmdn, time) = dcmdn;
    dtpnMg = kontpnMg*Mgi*(BmaxtpnMg-tpnMg-tpnCa)-kofftpnMg*tpnMg;
    ode(tpnMg, time) = dtpnMg;
    dtpnCa = kontpnCa*Cac*(BmaxtpnCa-tpnCa-tpnMg)-kofftpnCa*tpnCa;
    ode(tpnCa, time) = dtpnCa;
    dtpn = kontpn*Cac*(Bmaxtpn-tpn)-kofftpn*tpn;
    ode(tpn, time) = dtpn;
  enddef;

  def comp INa as
    var time: second {pub: in};
    var V: volt {pub: in};
    var R: J_per_moleK {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var NaSL: mM {pub: in};
    var Naj: mM {pub: in};
    var Nao: mM {pub: in};
    var slo: dimensionless {pub: in};
    var alfam: per_s;
    var betam: per_s;
    var alfah: per_s;
    var betah: per_s;
    var alfaj: per_s;
    var betaj: per_s;
    var dm: per_s;
    var dh: per_s;
    var dj: per_s;
    var m: dimensionless {init: 0.00137519692399913};
    var h: dimensionless {init: 0.987083984979284};
    var j: dimensionless {init: 0.991789877889335};
    var GNamax: S_per_F {init: 16000};
    var FxNaj: dimensionless {init: 0.11};
    var FxNaSL: dimensionless {init: 0.89};
    var gNaSL: S_per_F;
    var gNaj: S_per_F;
    var ENaSL: volt {pub: out};
    var ENaj: volt {pub: out};
    var INaSL: A_per_F;
    var INaj: A_per_F {pub: out};
    var INa: A_per_F {pub: out};
    alfam = sel
      case abs(V-(-0.04713{volt})) >= 1e-12{volt}:
        0.32{per_V_per_s}*(V*1000{dimensionless}+47.13{volt})/(1{dimensionless}-exp(-0.1{per_V}*(V*1000{dimensionless}+47.13{volt})));
      otherwise:
        0.32{per_s}/0.1{dimensionless};
    endsel;
    betam = 0.08{per_s}*exp(-V*1000{dimensionless}/11{volt});
    dm = (alfam*(1{dimensionless}-m)-betam*m)*1000{dimensionless}*slo;
    ode(m, time) = dm;
    betah = (V < -0.04{volt})*(3.56{per_s}*exp(0.079{per_V}*V*1000{dimensionless})+310000{per_s}*exp(0.35{per_V}*V*1000{dimensionless}))+(V >= -0.04{volt})/(0.13{second}*(1{dimensionless}+exp(-(V*1000{dimensionless}+10.66{volt})/11.1{volt})));
    alfah = (V < -0.04{volt})*0.135{per_s}*exp(-(80{volt}+V*1000{dimensionless})/6.8{volt});
    dh = (alfah*(1{dimensionless}-h)-betah*h)*1000{dimensionless}*slo;
    ode(h, time) = dh;
    betaj = (V < -0.04{volt})*0.1212{per_s}*exp(-0.01052{per_V}*V*1000{dimensionless})/(1{dimensionless}+exp(-0.1378{per_V}*(V*1000{dimensionless}+40.14{volt})))+(V >= -0.04{volt})*0.3{per_s}*exp(-2.535e-7{per_V}*V*1000{dimensionless})/(1{dimensionless}+exp(-0.1{per_V}*(V*1000{dimensionless}+32{volt})));
    alfaj = (V < -0.04{volt})*(-127140{per_s}*exp(0.2444{per_V}*V*1000{dimensionless})-3.474e-5{per_s}*exp(-0.04391{per_V}*V*1000{dimensionless}))*(V*1000{dimensionless}+37.78{volt})/(1{dimensionless}+exp(0.311{per_V}*(V*1000{dimensionless}+79.23{volt})));
    dj = (alfaj*(1{dimensionless}-j)-betaj*j)*1000{dimensionless}*slo;
    ode(j, time) = dj;
    gNaSL = pow(m, 3{dimensionless})*h*j*GNamax*FxNaSL;
    gNaj = pow(m, 3{dimensionless})*h*j*GNamax*FxNaj;
    ENaSL = R*T/F*ln(Nao/NaSL);
    INaSL = gNaSL*(V-ENaSL);
    ENaj = R*T/F*ln(Nao/Naj);
    INaj = gNaj*(V-ENaj);
    INa = INaSL+INaj;
  enddef;

  def comp INaBk as
    var V: volt {pub: in};
    var ENaSL: volt {pub: in};
    var ENaj: volt {pub: in};
    var GNaBkmax: S_per_F {init: 0.297};
    var FxNaBkj: dimensionless {init: 0.11};
    var FxNaBkSL: dimensionless {init: 0.89};
    var INaBk: A_per_F {pub: out};
    var INaBkj: A_per_F {pub: out};
    var INaBkSL: A_per_F {pub: out};
    INaBkSL = FxNaBkSL*GNaBkmax*(V-ENaSL);
    INaBkj = FxNaBkj*GNaBkmax*(V-ENaj);
    INaBk = INaBkSL+INaBkj;
  enddef;

  def comp INaK as
    var V: volt {pub: in};
    var R: J_per_moleK {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ko: mM {pub: in};
    var Nao: mM {pub: in};
    var NaSL: mM {pub: in};
    var Naj: mM {pub: in};
    var FxNaKj: dimensionless {init: 0.11};
    var FxNaKSL: dimensionless {init: 0.89};
    var KmNai: mM {init: 11};
    var KmKo: mM {init: 1.5};
    var INaKmax: A_per_F {init: 1.8909};
    var sigma: dimensionless;
    var HNaK: dimensionless {init: 4};
    var INaK: A_per_F {pub: out};
    var INaKj: A_per_F {pub: out};
    var INaKSL: A_per_F {pub: out};
    var fV: dimensionless;
    sigma = (exp(Nao/67.3{mM})-1{dimensionless})/7{dimensionless};
    fV = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    INaKj = FxNaKj*INaKmax*fV*1{dimensionless}/(1{dimensionless}+pow(KmNai/Naj, HNaK))*Ko/(Ko+KmKo);
    INaKSL = FxNaKSL*INaKmax*fV*1{dimensionless}/(1{dimensionless}+pow(KmNai/NaSL, HNaK))*Ko/(Ko+KmKo);
    INaK = INaKj+INaKSL;
  enddef;

  def comp Ikr as
    var time: second {pub: in};
    var V: volt {pub: in};
    var EK: volt {pub: in};
    var slo: dimensionless {pub: in};
    var Ko: mM {pub: in};
    var tauXr: second;
    var tauXr_sing: second;
    var R: dimensionless;
    var Xrinf: dimensionless;
    var dXr: per_s;
    var GKrmax: S_per_F;
    var Xr: dimensionless {init: 0.00849286285164435};
    var Ikr: A_per_F {pub: out};
    tauXr = sel
      case (abs(V-(-0.007{volt})) >= 1e-12{volt})*(abs(V-(-0.01{volt})) >= 1e-12{volt}):
        1{dimensionless}/(0.00138{per_V_per_s}*(1000{dimensionless}*V+7{volt})/(1{dimensionless}-exp(-0.123{per_V}*(1000{dimensionless}*V+7{volt})))+0.00061{per_V_per_s}*(1000{dimensionless}*V+10{volt})/(exp(0.145{per_V}*(1000{dimensionless}*V+10{volt}))-1{dimensionless}));
      otherwise:
        tauXr_sing;
    endsel;
    tauXr_sing = sel
      case abs(V-(-0.01{volt}) >= 1e-12{volt}):
        1{dimensionless}/(0.00138{per_s}/(-0.123{dimensionless})+0.00061{per_V_per_s}*(1000{dimensionless}*V+10{volt})/(exp(0.145{per_V}*(1000{dimensionless}*V+10{volt}))-1{dimensionless}));
      otherwise:
        1{dimensionless}/(0.00138{per_V_per_s}*(1000{dimensionless}*V+7{volt})/(1{dimensionless}-exp(-0.123{per_V}*(1000{dimensionless}*V+7{volt})))+0.00061{per_s}/0.145{dimensionless});
    endsel;
    R = 1{dimensionless}/(1{dimensionless}+exp((1000{dimensionless}*V+33{volt})/22.4{volt}));
    Xrinf = 1{dimensionless}/(1{dimensionless}+exp(-(1000{dimensionless}*V+50{volt})/7.5{volt}));
    dXr = (Xrinf-Xr)/tauXr*1000{dimensionless}*slo;
    ode(Xr, time) = dXr;
    GKrmax = 0.0168{S_per_F}*1000{dimensionless}*sqrt(Ko/5.4{mM});
    Ikr = GKrmax*R*Xr*(V-EK);
  enddef;

  def comp Iks as
    var time: second {pub: in};
    var Caj: mM {pub: in};
    var CaSL: mM {pub: in};
    var Nac: mM {pub: in};
    var slo: dimensionless {pub: in};
    var V: volt {pub: in};
    var R: J_per_moleK {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Ko: mM {pub: in};
    var Ki: mM {pub: in};
    var Nao: mM {pub: in};
    var FxKsj: dimensionless {init: 0.11};
    var FxKsSL: dimensionless {init: 0.89};
    var PNaK: dimensionless {init: 0.01833};
    var Xsinf: dimensionless;
    var tauXs: second;
    var dXs: per_s;
    var Xs: dimensionless {init: 0.00536992529877988};
    var Gksj1: dimensionless;
    var Gksj: dimensionless;
    var GksSL1: dimensionless;
    var GksSL: dimensionless;
    var Iksj: A_per_F;
    var IksSL: A_per_F;
    var Iks: A_per_F {pub: out};
    Xsinf = 1{dimensionless}/(1{dimensionless}+exp(-(1000{dimensionless}*V-1.5{volt})/16.7{volt}));
    tauXs = sel
      case abs(V-(-0.03{volt})) >= 1e-12{volt}:
        1{dimensionless}/(0.0000719{per_V_per_s}*(1000{dimensionless}*V+30{volt})/(1{dimensionless}-exp(-0.148{per_V}*(1000{dimensionless}*V+30{volt})))+0.000131{per_V_per_s}*(1000{dimensionless}*V+30{volt})/(exp(0.0687{per_V}*(1000{dimensionless}*V+30{volt}))-1{dimensionless}));
      otherwise:
        1{dimensionless}/(0.0000719{per_s}/0.148{dimensionless}+0.000131{per_s}/0.0687{dimensionless});
    endsel;
    dXs = (Xsinf-Xs)/tauXs*1000{dimensionless}*slo;
    ode(Xs, time) = dXs;
    Gksj1 = -log(Caj, 10{dimensionless})+3{dimensionless};
    Gksj = 1000{dimensionless}*0.07{dimensionless}*(0.057{dimensionless}+0.19{dimensionless}/(1{dimensionless}+exp((-7.2{mM}+Caj)/0.6{mM})));
    GksSL1 = -log(CaSL, 10{dimensionless})+3{dimensionless};
    GksSL = 1000{dimensionless}*0.07{dimensionless}*(0.057{dimensionless}+0.19{dimensionless}/(1{dimensionless}+exp((-7.2{mM}+CaSL)/0.6{mM})));
    Iksj = FxKsj*Gksj*sqr(Xs)*(V-R*T/F*ln((Ko+PNaK*Nao)/(Ki+PNaK*Nac)));
    IksSL = FxKsSL*GksSL*sqr(Xs)*(V-R*T/F*ln((Ko+PNaK*Nao)/(Ki+PNaK*Nac)));
    Iks = Iksj+IksSL;
  enddef;

  def comp Itos as
    var time: second {pub: in};
    var V: volt {pub: in};
    var EK: volt {pub: in};
    var slo: dimensionless {pub: in};
    var Xtosinf: dimensionless;
    var Ytosinf: dimensionless;
    var Rtosinf: dimensionless;
    var TauXtos: second;
    var TauYtos: second;
    var TauRtos: second;
    var dXtos: per_s;
    var dYtos: per_s;
    var dRtos: per_s;
    var Xtos: dimensionless {init: 0.00401644592026039};
    var Ytos: dimensionless {init: 0.994621752826151};
    var Rtos: dimensionless {init: 0.994621752826151};
    var Gtosmax: S_per_F {init: 60};
    var Itos: A_per_F {pub: out};
    Xtosinf = 1{dimensionless}/(1{dimensionless}+exp(-(V*1000{dimensionless}+3{volt})/15{volt}));
    TauXtos = 9{second}/(1{dimensionless}+exp((1000{dimensionless}*V+3{volt})/15{volt}))+0.5{second};
    dXtos = (Xtosinf-Xtos)/TauXtos*1000{dimensionless}*slo;
    ode(Xtos, time) = dXtos;
    Ytosinf = 1{dimensionless}/(1{dimensionless}+exp((1000{dimensionless}*V+33.5{volt})/10{volt}));
    TauYtos = 3000{second}/(1{dimensionless}+exp((1000{dimensionless}*V+60{volt})/10{volt}))+30{second};
    dYtos = (Ytosinf-Ytos)/TauYtos*1000{dimensionless}*slo;
    ode(Ytos, time) = dYtos;
    Rtosinf = 1{dimensionless}/(1{dimensionless}+exp((1000{dimensionless}*V+33.5{volt})/10{volt}));
    TauRtos = 2800{second}/(1{dimensionless}+exp((1000{dimensionless}*V+60{volt})/10{volt}))+220{second};
    dRtos = (Rtosinf-Rtos)/TauRtos*1000{dimensionless}*slo;
    ode(Rtos, time) = dRtos;
    Itos = Gtosmax*Xtos*(Ytos+0.5{dimensionless}*Rtos)*(V-EK);
  enddef;

  def comp Itof as
    var time: second {pub: in};
    var V: volt {pub: in};
    var EK: volt {pub: in};
    var slo: dimensionless {pub: in};
    var Xtofinf: dimensionless;
    var Ytofinf: dimensionless;
    var TauXtof: second;
    var TauYtof: second;
    var dXtof: per_s;
    var dYtof: per_s;
    var Xtof: dimensionless {init: 0.00401644592026039};
    var Ytof: dimensionless {init: 0.994621752826151};
    var Gtofmax: S_per_F {init: 20};
    var Itof: A_per_F {pub: out};
    Xtofinf = 1{dimensionless}/(1{dimensionless}+exp(-(V*1000{dimensionless}+3{volt})/15{volt}));
    TauXtof = 3.5{second}*exp(-sqr(1000{dimensionless}*V/30{volt}))+1.5{second};
    dXtof = (Xtofinf-Xtof)/TauXtof*1000{dimensionless}*slo;
    ode(Xtof, time) = dXtof;
    Ytofinf = 1{dimensionless}/(1{dimensionless}+exp((1000{dimensionless}*V+33.5{volt})/10{volt}));
    TauYtof = 20{second}/(1{dimensionless}+exp((1000{dimensionless}*V+33.5{volt})/10{volt}))+20{second};
    dYtof = (Ytofinf-Ytof)/TauYtof*1000{dimensionless}*slo;
    ode(Ytof, time) = dYtof;
    Itof = Gtofmax*Xtof*Ytof*(V-EK);
  enddef;

  def comp Ik1 as
    var time: second {pub: in};
    var V: volt {pub: in};
    var EK: volt {pub: in};
    var Ko: mM {pub: in};
    var betak1: dimensionless;
    var alfak1: dimensionless;
    var gK1max: S_per_F;
    var gK1: S_per_F;
    var Ik1: A_per_F {pub: out};
    betak1 = (0.49124{dimensionless}*exp(0.08032{per_V}*(V*1000{dimensionless}-EK*1000{dimensionless}+5.476{volt}))+exp(0.06175{per_V}*(V*1000{dimensionless}-EK*1000{dimensionless}-594.31{volt})))/(1{dimensionless}+exp(-0.5143{per_V}*(V*1000{dimensionless}-EK*1000{dimensionless}+4.753{volt})));
    alfak1 = 1.02{dimensionless}/(1{dimensionless}+exp(0.2385{per_V}*(V*1000{dimensionless}-EK*1000{dimensionless}-59.215{volt})));
    gK1max = 0.9{S_per_F}*sqrt(Ko/5.4{mM})*1000{dimensionless};
    gK1 = alfak1/(betak1+alfak1)*gK1max;
    Ik1 = gK1*(V-EK);
  enddef;

  def comp NaBuffering as
    var time: second {pub: in};
    var NaSL: mM {pub: in};
    var Naj: mM {pub: in};
    var kon: per_mM_per_s {init: 0.1};
    var koff: per_s {init: 1};
    var Bmaxj: mM {init: 7.561};
    var BmaxSL: mM {init: 1.65};
    var NaLj: mM {init: 3.539892};
    var dNaLj: mM_per_s {pub: out};
    var dNaLSL: mM_per_s {pub: out};
    var NaLSL: mM {init: 7.720854e-1};
    dNaLSL = kon*NaSL*(BmaxSL-NaLSL)-koff*NaLSL;
    ode(NaLSL, time) = dNaLSL;
    dNaLj = kon*Naj*(Bmaxj-NaLj)-koff*NaLj;
    ode(NaLj, time) = dNaLj;
  enddef;

  def comp IClBk as
    var time: second {pub: in};
    var V: volt {pub: in};
    var ECl: volt {pub: in};
    var GClBk: S_per_F {init: 9};
    var IClBk: A_per_F {pub: out};
    IClBk = GClBk*(V-ECl);
  enddef;

  def comp IClCa as
    var time: second {pub: in};
    var V: volt {pub: in};
    var ECl: volt {pub: in};
    var Caj: mM {pub: in};
    var CaSL: mM {pub: in};
    var GClmax: S_per_F {init: 109.625};
    var KdClCa: mM {init: 100e-3};
    var FKClj: dimensionless {init: 0.11};
    var FKClSL: dimensionless {init: 0.89};
    var IClCaj: A_per_F;
    var IClCaSL: A_per_F;
    var IClCa: A_per_F {pub: out};
    IClCaj = FKClj*GClmax*(V-ECl)/(1{dimensionless}+KdClCa/Caj);
    IClCaSL = FKClSL*GClmax*(V-ECl)/(1{dimensionless}+KdClCa/CaSL);
    IClCa = IClCaj+IClCaSL;
  enddef;

  def comp Ikp as
    var V: volt {pub: in};
    var EK: volt {pub: in};
    var GKp: S_per_F {init: 1};
    var f: dimensionless;
    var Ikp: A_per_F {pub: out};
    f = 1{dimensionless}/(1{dimensionless}+exp(7.488{dimensionless}-V*1000{dimensionless}/5.98{volt}));
    Ikp = f*(V-EK)*GKp;
  enddef;
  def map between IonicFluxes and Environment for
    vars time and time;
    vars FS1SLNa and FS1SLNa;
    vars FS2SLNa and FS2SLNa;
    vars FS3SLNa and FS3SLNa;
    vars FS3cytNa and FS3cytNa;
    vars FS1jNa and FS1jNa;
    vars FS2jNa and FS2jNa;
    vars JNajSL and JNajSL;
    vars JNaSLcyt and JNaSLcyt;
  enddef;
  def map between JSRCaRel and Environment for
    vars time and time;
  enddef;
  def map between Poj and Environment for
    vars time and time;
  enddef;
  def map between PoSL and Environment for
    vars time and time;
  enddef;
  def map between CaBuffer and Environment for
    vars time and time;
    vars Vcyt and Vcyt;
    vars VSL and VSL;
    vars Vjct and Vjct;
    vars VSR and VSR;
    vars Mgi and Mgi;
  enddef;
  def map between INa and IonicFluxes for
    vars V and V;
    vars slo and slo;
    vars NaSL and NaSL;
    vars Naj and Naj;
    vars INa and INa;
    vars INaj and INaj;
  enddef;
  def map between IClCa and IonicFluxes for
    vars V and V;
    vars IClCa and IClCa;
  enddef;
  def map between Iks and IonicFluxes for
    vars V and V;
    vars slo and slo;
    vars Nac and Nac;
    vars Iks and Iks;
  enddef;
  def map between INaBk and IonicFluxes for
    vars V and V;
    vars INaBk and INaBk;
    vars INaBkj and INaBkj;
    vars INaBkSL and INaBkSL;
  enddef;
  def map between INaK and IonicFluxes for
    vars V and V;
    vars NaSL and NaSL;
    vars Naj and Naj;
    vars INaK and INaK;
    vars INaKj and INaKj;
    vars INaKSL and INaKSL;
  enddef;
  def map between Poj and IonicFluxes for
    vars V and V;
  enddef;
  def map between PoSL and IonicFluxes for
    vars V and V;
  enddef;
  def map between ICaL and IonicFluxes for
    vars V and V;
    vars Naj and Naj;
    vars NaSL and NaSL;
    vars ICaL and ICaL;
    vars INaSL and INaSL;
  enddef;
  def map between JSRCaRel and IonicFluxes for
    vars V and V;
  enddef;
  def map between ICaL and Environment for
    vars F and F;
    vars R and R;
    vars T and T;
    vars Cao and Cao;
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
    vars spefcapica and spefcapica;
  enddef;
  def map between INa and Environment for
    vars time and time;
    vars F and F;
    vars R and R;
    vars T and T;
    vars Nao and Nao;
  enddef;
  def map between Iks and Environment for
    vars time and time;
    vars F and F;
    vars R and R;
    vars T and T;
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between INaCa and IonicFluxes for
    vars V and V;
    vars NaSL and NaSL;
    vars Naj and Naj;
    vars INaCa and INaCa;
    vars INaCaj and INaCaj;
    vars INaCaSL and INaCaSL;
  enddef;
  def map between INaCa and Environment for
    vars F and F;
    vars R and R;
    vars T and T;
    vars Cao and Cao;
    vars Nao and Nao;
  enddef;
  def map between INaBk and INa for
    vars ENaSL and ENaSL;
    vars ENaj and ENaj;
  enddef;
  def map between INaK and Environment for
    vars F and F;
    vars R and R;
    vars T and T;
    vars Nao and Nao;
    vars Ko and Ko;
  enddef;
  def map between INaCa and CaDynamics for
    vars Caj and Caj;
    vars CaSL and CaSL;
    vars INaCaSL and INaCaSL;
    vars INaCaj and INaCaj;
  enddef;
  def map between IClCa and CaDynamics for
    vars Caj and Caj;
    vars CaSL and CaSL;
  enddef;
  def map between CaDynamics and IonicFluxes for
    vars NaSL and NaSL;
    vars Naj and Naj;
  enddef;
  def map between NaBuffering and IonicFluxes for
    vars NaSL and NaSL;
    vars Naj and Naj;
    vars dNaLSL and dNaLSL;
    vars dNaLj and dNaLj;
  enddef;
  def map between ICaBk and IonicFluxes for
    vars V and V;
    vars ICaBk and ICaBk;
  enddef;
  def map between ICaBk and Environment for
    vars F and F;
    vars R and R;
    vars T and T;
    vars Cao and Cao;
  enddef;
  def map between Ikr and IonicFluxes for
    vars V and V;
    vars slo and slo;
    vars Ikr and Ikr;
  enddef;
  def map between Itos and IonicFluxes for
    vars V and V;
    vars slo and slo;
    vars Itos and Itos;
  enddef;
  def map between IClBk and IonicFluxes for
    vars V and V;
    vars IClBk and IClBk;
  enddef;
  def map between Itof and IonicFluxes for
    vars V and V;
    vars slo and slo;
    vars Itof and Itof;
  enddef;
  def map between Ik1 and IonicFluxes for
    vars V and V;
    vars Ik1 and Ik1;
  enddef;
  def map between Ikp and IonicFluxes for
    vars V and V;
    vars Ikp and Ikp;
  enddef;
  def map between Ikr and Environment for
    vars time and time;
    vars Ko and Ko;
    vars EK and EK;
  enddef;
  def map between IClBk and Environment for
    vars time and time;
    vars ECl and ECl;
  enddef;
  def map between IClCa and Environment for
    vars time and time;
    vars ECl and ECl;
  enddef;
  def map between Ikp and Environment for
    vars EK and EK;
  enddef;
  def map between Ik1 and Environment for
    vars time and time;
    vars Ko and Ko;
    vars EK and EK;
  enddef;
  def map between Itos and Environment for
    vars time and time;
    vars EK and EK;
  enddef;
  def map between Itof and Environment for
    vars time and time;
    vars EK and EK;
  enddef;
  def map between NaBuffering and Environment for
    vars time and time;
  enddef;
  def map between Iks and CaDynamics for
    vars CaSL and CaSL;
    vars Caj and Caj;
  enddef;
  def map between ICaBk and CaDynamics for
    vars CaSL and CaSL;
    vars Caj and Caj;
    vars ICaBkSL and ICaBkSL;
    vars ICaBkj and ICaBkj;
  enddef;
  def map between ISLCaP and IonicFluxes for
    vars ISLCaP and ISLCaP;
  enddef;
  def map between ISLCaP and CaDynamics for
    vars CaSL and CaSL;
    vars Caj and Caj;
    vars ISLCaPSL and ISLCaPSL;
    vars ISLCaPj and ISLCaPj;
  enddef;
  def map between ISRCaP and CaDynamics for
    vars CaSR and CaSR;
    vars Cac and Cac;
    vars ISRCaP and ISRCaP;
  enddef;
  def map between JSRCaRel and CaDynamics for
    vars CaSR and CaSR;
    vars Caj and Caj;
    vars JSRCaRel and JSRCaRel;
  enddef;
  def map between JSRLeak and CaDynamics for
    vars CaSR and CaSR;
    vars Caj and Caj;
    vars JSRLeak and JSRLeak;
  enddef;
  def map between CaBuffer and CaDynamics for
    vars CaSR and CaSR;
    vars CaSL and CaSL;
    vars Caj and Caj;
    vars Cac and Cac;
    vars dcsqn and dcsqn;
    vars dtpn and dtpn;
    vars dtpnCa and dtpnCa;
    vars dtpnMg and dtpnMg;
    vars dcmdn and dcmdn;
    vars dmysCa and dmysCa;
    vars dmysMg and dmysMg;
    vars dSR and dSR;
    vars dSLSL and dSLSL;
    vars dSLHighSL and dSLHighSL;
    vars dSLj and dSLj;
    vars dSLHighj and dSLHighj;
  enddef;
  def map between CaDynamics and Environment for
    vars time and time;
    vars Vcyt and Vcyt;
    vars Vjct and Vjct;
    vars FS1SLCa and FS1SLCa;
    vars FS2SLCa and FS2SLCa;
    vars FS1jCa and FS1jCa;
    vars FS2jCa and FS2jCa;
    vars FSSRj and FSSRj;
    vars FS3SLCa and FS3SLCa;
    vars FS3cytCa and FS3cytCa;
    vars FSSRcyt and FSSRcyt;
    vars JCajSL and JCajSL;
    vars JCaSLcyt and JCaSLcyt;
  enddef;
  def map between Poj and CaDynamics for
    vars Caj and Caj;
  enddef;
  def map between PoSL and CaDynamics for
    vars CaSL and CaSL;
  enddef;
  def map between ICaL and CaDynamics for
    vars Caj and Caj;
    vars CaSL and CaSL;
    vars ICaLSL and ICaLSL;
    vars ICaLj and ICaLj;
  enddef;
  def map between ICaL and PoSL for
    vars OSL and OSL;
  enddef;
  def map between ICaL and Poj for
    vars Oj and Oj;
  enddef;
enddef;
