<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:xlink="http://www.w3.org/1999/xlink" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:semsim="http://www.bhi.washington.edu/SemSim#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="niederer_hunter_smith_2006" cmeta:id="niederer_2006">
  <documentation xmlns="http://cellml.org/tmp-documentation">
    <article>
      <section id="sec_status">
        <title>Model Status</title>
        <para>This model is known to run in OpenCell and COR to reproduce the output shown in the publication. The units have been checked and they are consistent.</para>
      </section>
      <sect1 id="sec_structure">
        <title>Model Structure</title>
        <para>Abstract: The determinants of relaxation in cardiac muscle are poorly understood, yet compromised relaxation accompanies various pathologies and impaired pump function. In this study, we develop a model of active contraction to elucidate the relative importance of the [Ca2+]i transient magnitude, the unbinding of Ca2+ from troponin C (TnC), and the length-dependence of tension and Ca2+ sensitivity on relaxation. Using the framework proposed by one of our researchers, we extensively reviewed experimental literature, to quantitatively characterize the binding of Ca2+ to TnC, the kinetics of tropomyosin, the availability of binding sites, and the kinetics of crossbridge binding after perturbations in sarcomere length. Model parameters were determined from multiple experimental results and modalities (skinned and intact preparations) and model results were validated against data from length step, caged Ca2+, isometric twitches, and the half-time to relaxation with increasing sarcomere length experiments. A factorial analysis found that the [Ca2+]i transient and the unbinding of Ca2+ from TnC were the primary determinants of relaxation, with a fivefold greater effect than that of length-dependent maximum tension and twice the effect of tension-dependent binding of Ca2+ to TnC and length-dependent Ca2+ sensitivity. The affects of the [Ca2+]i transient and the unbinding rate of Ca2+ from TnC were tightly coupled with the effect of increasing either factor, depending on the reference [Ca2+]i transient and unbinding rate.</para>
        <informalfigure float="0" id="fig_reaction_diagram">
          <mediaobject>
            <imageobject>
              <objectinfo>
                <title>model diagram</title>
              </objectinfo>
              <imagedata fileref="niederer_2006.png" />
            </imageobject>
          </mediaobject>
          <caption>Schematic diagram depicting the relationships of the active contraction framework proposed by Hunter et al. (11). The model is driven by SL and sarcomere velocity, and intracellular [Ca2+]i. Inputs are in bold, algebraic length dependencies are in italics, processes described by differential equations are standard font.</caption>
        </informalfigure>
        <para>The original publication reference is cited below:</para>
        <para>
          A Quantitative Analysis of Cardiac Myocyte Relaxation: A Simulation Study, Steven Niederer, Peter Hunter, Nicholas Smith, 2006
          <emphasis>Biophysical Journal</emphasis>
          , 90 1697-1722
          <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/16339881?ordinalpos=1&amp;itool=EntrezSystem2.PEntrez.Pubmed.Pubmed_ResultsPanel.Pubmed_RVDocSum">PubMed ID: 16339881</ulink>
        </para>
      </sect1>
    </article>
  </documentation>
  <units name="mM_per_ms">
    <unit units="mM" />
    <unit exponent="-1.0" prefix="milli" units="second" />
  </units>
  <units name="per_ms">
    <unit exponent="-1.0" prefix="milli" units="second" />
  </units>
  <units name="ms">
    <unit prefix="milli" units="second" />
  </units>
  <units name="mM">
    <unit exponent="-1.0" units="litre" />
    <unit prefix="milli" units="mole" />
  </units>
  <units name="per_mM_per_ms">
    <unit exponent="-1.0" prefix="milli" units="second" />
    <unit exponent="-1.0" units="mM" />
  </units>
  <units name="N_per_mm2">
    <unit units="newton" />
    <unit exponent="-2.0" prefix="milli" units="metre" />
  </units>
  <component name="environment">
    <variable cmeta:id="environment_time" name="time" public_interface="out" units="ms" />
  </component>
  <component name="intracellular_ion_concentrations" cmeta:id="id_00001">
    <variable cmeta:id="intracellular_ion_concentrations.time" name="time" public_interface="in" units="ms" />
    <variable cmeta:id="intracellular_ion_concentrations_Ca_i" name="Ca_i" public_interface="out" units="mM" />
    <variable cmeta:id="id_00002" name="Ca_b" public_interface="out" units="mM" />
    <variable cmeta:id="id_00003" initial_value="0.067593139865" name="TRPN" public_interface="out" units="mM" />
    <variable cmeta:id="id_00004" name="Ca_TRPN_Max" public_interface="in" units="mM" />
    <variable cmeta:id="id_00005" name="J_TRPN" public_interface="in" units="mM_per_ms" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>Ca_b</ci>
        <apply>
          <minus />
          <ci>Ca_TRPN_Max</ci>
          <ci>TRPN</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>TRPN</ci>
        </apply>
        <ci>J_TRPN</ci>
      </apply>
      <apply>
        <eq />
        <ci>Ca_i</ci>
        <piecewise>
          <piece>
            <apply>
              <times />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1000</cn>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" type="e-notation" cellml:units="mM">
                1.8433
                <sep />
                -7
              </cn>
            </apply>
            <apply>
              <lt />
              <ci>time</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1</cn>
            </apply>
          </piece>
          <piece>
            <apply>
              <times />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1000</cn>
              <apply>
                <minus />
                <apply>
                  <plus />
                  <apply>
                    <minus />
                    <apply>
                      <times />
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM">1.055</cn>
                      <apply>
                        <power />
                        <apply>
                          <divide />
                          <ci>time</ci>
                          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1000</cn>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                      </apply>
                    </apply>
                    <apply>
                      <times />
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM">0.03507</cn>
                      <apply>
                        <power />
                        <apply>
                          <divide />
                          <ci>time</ci>
                          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1000</cn>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                      </apply>
                    </apply>
                  </apply>
                  <apply>
                    <divide />
                    <apply>
                      <times />
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM">0.0003992</cn>
                      <ci>time</ci>
                    </apply>
                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1000</cn>
                  </apply>
                </apply>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" type="e-notation" cellml:units="mM">
                  1.356
                  <sep />
                  -6
                </cn>
              </apply>
            </apply>
            <apply>
              <and />
              <apply>
                <geq />
                <ci>time</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">10</cn>
              </apply>
              <apply>
                <lt />
                <ci>time</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">15</cn>
              </apply>
            </apply>
          </piece>
          <piece>
            <apply>
              <times />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1000</cn>
              <apply>
                <minus />
                <apply>
                  <plus />
                  <apply>
                    <minus />
                    <apply>
                      <times />
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM">0.014</cn>
                      <apply>
                        <power />
                        <apply>
                          <divide />
                          <ci>time</ci>
                          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1000</cn>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                      </apply>
                    </apply>
                    <apply>
                      <times />
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM">0.002555</cn>
                      <apply>
                        <power />
                        <apply>
                          <divide />
                          <ci>time</ci>
                          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1000</cn>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                      </apply>
                    </apply>
                  </apply>
                  <apply>
                    <divide />
                    <apply>
                      <times />
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM">0.0001494</cn>
                      <ci>time</ci>
                    </apply>
                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1000</cn>
                  </apply>
                </apply>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" type="e-notation" cellml:units="mM">
                  1.428
                  <sep />
                  -6
                </cn>
              </apply>
            </apply>
            <apply>
              <and />
              <apply>
                <geq />
                <ci>time</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">15</cn>
              </apply>
              <apply>
                <lt />
                <ci>time</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">55</cn>
              </apply>
            </apply>
          </piece>
          <piece>
            <apply>
              <times />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1000</cn>
              <apply>
                <plus />
                <apply>
                  <minus />
                  <apply>
                    <minus />
                    <apply>
                      <times />
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" type="e-notation" cellml:units="mM">
                        1.739
                        <sep />
                        -5
                      </cn>
                      <apply>
                        <power />
                        <apply>
                          <divide />
                          <ci>time</ci>
                          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1000</cn>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                      </apply>
                    </apply>
                    <apply>
                      <times />
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" type="e-notation" cellml:units="mM">
                        3.209
                        <sep />
                        -6
                      </cn>
                      <apply>
                        <power />
                        <apply>
                          <divide />
                          <ci>time</ci>
                          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1000</cn>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                      </apply>
                    </apply>
                  </apply>
                  <apply>
                    <divide />
                    <apply>
                      <times />
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" type="e-notation" cellml:units="mM">
                        5.689
                        <sep />
                        -6
                      </cn>
                      <ci>time</ci>
                    </apply>
                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1000</cn>
                  </apply>
                </apply>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" type="e-notation" cellml:units="mM">
                  1.719
                  <sep />
                  -6
                </cn>
              </apply>
            </apply>
            <apply>
              <and />
              <apply>
                <geq />
                <ci>time</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">55</cn>
              </apply>
              <apply>
                <lt />
                <ci>time</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">250</cn>
              </apply>
            </apply>
          </piece>
          <piece>
            <apply>
              <times />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1000</cn>
              <apply>
                <plus />
                <apply>
                  <minus />
                  <apply>
                    <plus />
                    <apply>
                      <minus />
                      <apply>
                        <times />
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM">0.0001321</cn>
                        <apply>
                          <power />
                          <apply>
                            <divide />
                            <ci>time</ci>
                            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1000</cn>
                          </apply>
                          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">4</cn>
                        </apply>
                      </apply>
                      <apply>
                        <times />
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM">0.0002197</cn>
                        <apply>
                          <power />
                          <apply>
                            <divide />
                            <ci>time</ci>
                            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1000</cn>
                          </apply>
                          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3</cn>
                        </apply>
                      </apply>
                    </apply>
                    <apply>
                      <times />
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="mM">0.0001374</cn>
                      <apply>
                        <power />
                        <apply>
                          <divide />
                          <ci>time</ci>
                          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1000</cn>
                        </apply>
                        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                      </apply>
                    </apply>
                  </apply>
                  <apply>
                    <divide />
                    <apply>
                      <times />
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" type="e-notation" cellml:units="mM">
                        3.895
                        <sep />
                        -5
                      </cn>
                      <ci>time</ci>
                    </apply>
                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1000</cn>
                  </apply>
                </apply>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" type="e-notation" cellml:units="mM">
                  4.441
                  <sep />
                  -6
                </cn>
              </apply>
            </apply>
            <apply>
              <and />
              <apply>
                <geq />
                <ci>time</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">250</cn>
              </apply>
              <apply>
                <lt />
                <ci>time</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">490</cn>
              </apply>
            </apply>
          </piece>
          <otherwise>
            <apply>
              <times />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1000</cn>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" type="e-notation" cellml:units="mM">
                1.2148
                <sep />
                -7
              </cn>
            </apply>
          </otherwise>
        </piecewise>
      </apply>
    </math>
  </component>
  <component name="thinfilaments" cmeta:id="id_00006" />
  <component name="tropomyosin" cmeta:id="id_00007">
    <variable cmeta:id="tropomyosin.z" initial_value="0.014417937837" name="z" public_interface="out" units="dimensionless" />
    <variable cmeta:id="tropomyosin.z_max" name="z_max" public_interface="out" units="dimensionless" />
    <variable cmeta:id="tropomyosin.time" name="time" public_interface="in" units="ms" />
    <variable cmeta:id="tropomyosin.k_on" name="k_on" public_interface="in" units="per_mM_per_ms" />
    <variable cmeta:id="tropomyosin.k_Ref_off" name="k_Ref_off" public_interface="in" units="per_ms" />
    <variable cmeta:id="tropomyosin.gamma_trpn" name="gamma_trpn" public_interface="in" units="dimensionless" />
    <variable cmeta:id="id_00012" name="Ca_TRPN_Max" public_interface="in" units="mM" />
    <variable cmeta:id="tropomyosin.alpha_0" initial_value="8e-3" name="alpha_0" units="per_ms" />
    <variable cmeta:id="tropomyosin.alpha_r1" initial_value="2e-3" name="alpha_r1" units="per_ms" />
    <variable cmeta:id="tropomyosin.alpha_r2" initial_value="1.75e-3" name="alpha_r2" units="per_ms" />
    <variable cmeta:id="tropomyosin.n_Rel" initial_value="3" name="n_Rel" units="dimensionless" />
    <variable cmeta:id="tropomyosin.K_z" initial_value="0.15" name="K_z" units="dimensionless" />
    <variable cmeta:id="tropomyosin.n_Hill" initial_value="3" name="n_Hill" units="dimensionless" />
    <variable cmeta:id="tropomyosin.Ca_50ref" initial_value="1.05e-3" name="Ca_50ref" units="mM" />
    <variable cmeta:id="tropomyosin.z_p" initial_value="0.85" name="z_p" units="dimensionless" />
    <variable cmeta:id="tropomyosin.beta_1" initial_value="-4" name="beta_1" units="dimensionless" />
    <variable cmeta:id="id_00014" name="Ca_50" units="mM" />
    <variable cmeta:id="id_00011" name="Ca_TRPN_50" units="mM" />
    <variable cmeta:id="tropomyosin.K_2" name="K_2" units="per_ms" />
    <variable cmeta:id="tropomyosin.K_1" name="K_1" units="per_ms" />
    <variable cmeta:id="tropomyosin.alpha_Tm" name="alpha_Tm" units="per_ms" />
    <variable cmeta:id="tropomyosin.beta_Tm" name="beta_Tm" units="per_ms" />
    <variable cmeta:id="tropomyosin.beta_0" name="beta_0" public_interface="in" units="dimensionless" />
    <variable cmeta:id="id_00013" name="Ca_b" public_interface="in" units="mM" />
    <variable cmeta:id="tropomyosin.lambda" name="lambda" public_interface="in" units="dimensionless" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>K_2</ci>
        <apply>
          <times />
          <apply>
            <divide />
            <apply>
              <times />
              <ci>alpha_r2</ci>
              <apply>
                <power />
                <ci>z_p</ci>
                <ci>n_Rel</ci>
              </apply>
            </apply>
            <apply>
              <plus />
              <apply>
                <power />
                <ci>z_p</ci>
                <ci>n_Rel</ci>
              </apply>
              <apply>
                <power />
                <ci>K_z</ci>
                <ci>n_Rel</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <minus />
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
            <apply>
              <divide />
              <apply>
                <times />
                <ci>n_Rel</ci>
                <apply>
                  <power />
                  <ci>K_z</ci>
                  <ci>n_Rel</ci>
                </apply>
              </apply>
              <apply>
                <plus />
                <apply>
                  <power />
                  <ci>z_p</ci>
                  <ci>n_Rel</ci>
                </apply>
                <apply>
                  <power />
                  <ci>K_z</ci>
                  <ci>n_Rel</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>K_1</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>alpha_r2</ci>
            <apply>
              <power />
              <ci>z_p</ci>
              <apply>
                <minus />
                <ci>n_Rel</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
              </apply>
            </apply>
            <ci>n_Rel</ci>
            <apply>
              <power />
              <ci>K_z</ci>
              <ci>n_Rel</ci>
            </apply>
          </apply>
          <apply>
            <power />
            <apply>
              <plus />
              <apply>
                <power />
                <ci>z_p</ci>
                <ci>n_Rel</ci>
              </apply>
              <apply>
                <power />
                <ci>K_z</ci>
                <ci>n_Rel</ci>
              </apply>
            </apply>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>z_max</ci>
        <apply>
          <divide />
          <apply>
            <minus />
            <apply>
              <divide />
              <ci>alpha_0</ci>
              <apply>
                <power />
                <apply>
                  <divide />
                  <ci>Ca_TRPN_50</ci>
                  <ci>Ca_TRPN_Max</ci>
                </apply>
                <ci>n_Hill</ci>
              </apply>
            </apply>
            <ci>K_2</ci>
          </apply>
          <apply>
            <plus />
            <ci>alpha_r1</ci>
            <ci>K_1</ci>
            <apply>
              <divide />
              <ci>alpha_0</ci>
              <apply>
                <power />
                <apply>
                  <divide />
                  <ci>Ca_TRPN_50</ci>
                  <ci>Ca_TRPN_Max</ci>
                </apply>
                <ci>n_Hill</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>Ca_50</ci>
        <apply>
          <times />
          <ci>Ca_50ref</ci>
          <apply>
            <plus />
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
            <apply>
              <times />
              <ci>beta_1</ci>
              <apply>
                <minus />
                <ci>lambda</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>Ca_TRPN_50</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>Ca_50</ci>
            <ci>Ca_TRPN_Max</ci>
          </apply>
          <apply>
            <plus />
            <ci>Ca_50</ci>
            <apply>
              <times />
              <apply>
                <divide />
                <ci>k_Ref_off</ci>
                <ci>k_on</ci>
              </apply>
              <apply>
                <minus />
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                <apply>
                  <divide />
                  <apply>
                    <times />
                    <apply>
                      <plus />
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                      <apply>
                        <times />
                        <ci>beta_0</ci>
                        <apply>
                          <minus />
                          <ci>lambda</ci>
                          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                        </apply>
                      </apply>
                    </apply>
                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.5</cn>
                  </apply>
                  <ci>gamma_trpn</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>alpha_Tm</ci>
        <apply>
          <times />
          <ci>alpha_0</ci>
          <apply>
            <power />
            <apply>
              <divide />
              <ci>Ca_b</ci>
              <ci>Ca_TRPN_50</ci>
            </apply>
            <ci>n_Hill</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>beta_Tm</ci>
        <apply>
          <plus />
          <ci>alpha_r1</ci>
          <apply>
            <divide />
            <apply>
              <times />
              <ci>alpha_r2</ci>
              <apply>
                <power />
                <ci>z</ci>
                <apply>
                  <minus />
                  <ci>n_Rel</ci>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                </apply>
              </apply>
            </apply>
            <apply>
              <plus />
              <apply>
                <power />
                <ci>z</ci>
                <ci>n_Rel</ci>
              </apply>
              <apply>
                <power />
                <ci>K_z</ci>
                <ci>n_Rel</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>z</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <times />
            <ci>alpha_Tm</ci>
            <apply>
              <minus />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
              <ci>z</ci>
            </apply>
          </apply>
          <apply>
            <times />
            <ci>beta_Tm</ci>
            <ci>z</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="troponin" cmeta:id="id_00008">
    <variable cmeta:id="troponin.J_TRPN" name="J_TRPN" public_interface="out" units="mM_per_ms" />
    <variable cmeta:id="troponin.Ca_TRPN_Max" initial_value="70e-3" name="Ca_TRPN_Max" public_interface="out" units="mM" />
    <variable cmeta:id="troponin.TRPN" name="TRPN" public_interface="in" units="mM" />
    <variable cmeta:id="troponin.Ca_i" name="Ca_i" public_interface="in" units="mM" />
    <variable cmeta:id="troponin.k_off" name="k_off" units="per_ms" />
    <variable cmeta:id="troponin.k_on" initial_value="100" name="k_on" public_interface="out" units="per_mM_per_ms" />
    <variable cmeta:id="troponin.k_Ref_off" initial_value="0.2" name="k_Ref_off" public_interface="out" units="per_ms" />
    <variable cmeta:id="troponin.gamma_trpn" initial_value="2" name="gamma_trpn" public_interface="out" units="dimensionless" />
    <variable cmeta:id="troponin.Tension" name="Tension" public_interface="in" units="N_per_mm2" />
    <variable cmeta:id="troponin.T_ref" name="T_ref" public_interface="in" units="N_per_mm2" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>k_off</ci>
        <piecewise>
          <piece>
            <apply>
              <times />
              <ci>k_Ref_off</ci>
              <apply>
                <minus />
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                <apply>
                  <divide />
                  <ci>Tension</ci>
                  <apply>
                    <times />
                    <ci>gamma_trpn</ci>
                    <ci>T_ref</ci>
                  </apply>
                </apply>
              </apply>
            </apply>
            <apply>
              <gt />
              <apply>
                <minus />
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                <apply>
                  <divide />
                  <ci>Tension</ci>
                  <apply>
                    <times />
                    <ci>gamma_trpn</ci>
                    <ci>T_ref</ci>
                  </apply>
                </apply>
              </apply>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.1</cn>
            </apply>
          </piece>
          <otherwise>
            <apply>
              <times />
              <ci>k_Ref_off</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.1</cn>
            </apply>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq />
        <ci>J_TRPN</ci>
        <apply>
          <minus />
          <apply>
            <times />
            <apply>
              <minus />
              <ci>Ca_TRPN_Max</ci>
              <ci>TRPN</ci>
            </apply>
            <ci>k_off</ci>
          </apply>
          <apply>
            <times />
            <ci>Ca_i</ci>
            <ci>TRPN</ci>
            <ci>k_on</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Myofilaments" cmeta:id="id_00009">
    <variable cmeta:id="Myofilaments.time" name="time" public_interface="in" units="ms" />
    <variable cmeta:id="Myofilaments.lambda" name="lambda" public_interface="out" units="dimensionless" />
    <variable cmeta:id="Myofilaments.ExtensionRatio" name="ExtensionRatio" public_interface="out" units="dimensionless" />
    <variable cmeta:id="Myofilaments.dExtensionRatiodt" name="dExtensionRatiodt" public_interface="out" units="per_ms" />
    <variable cmeta:id="Myofilaments.lambda_prev" name="lambda_prev" public_interface="out" units="dimensionless" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>ExtensionRatio</ci>
        <piecewise>
          <piece>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
            <apply>
              <gt />
              <ci>time</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="ms">1000</cn>
            </apply>
          </piece>
          <otherwise>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq />
        <ci>lambda_prev</ci>
        <ci>ExtensionRatio</ci>
      </apply>
      <apply>
        <eq />
        <ci>dExtensionRatiodt</ci>
        <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="per_ms">0</cn>
      </apply>
      <apply>
        <eq />
        <ci>lambda</ci>
        <piecewise>
          <piece>
            <ci>ExtensionRatio</ci>
            <apply>
              <and />
              <apply>
                <gt />
                <ci>ExtensionRatio</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.8</cn>
              </apply>
              <apply>
                <leq />
                <ci>ExtensionRatio</ci>
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1.15</cn>
              </apply>
            </apply>
          </piece>
          <piece>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1.15</cn>
            <apply>
              <gt />
              <ci>ExtensionRatio</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1.15</cn>
            </apply>
          </piece>
          <otherwise>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0.8</cn>
          </otherwise>
        </piecewise>
      </apply>
    </math>
  </component>
  <component name="filament_overlap" cmeta:id="id_00010">
    <variable cmeta:id="filament_overlap.lambda" name="lambda" public_interface="in" units="dimensionless" />
    <variable cmeta:id="filament_overlap.overlap" name="overlap" public_interface="out" units="dimensionless" />
    <variable cmeta:id="filament_overlap.beta_0" initial_value="4.9" name="beta_0" public_interface="out" units="dimensionless" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>overlap</ci>
        <apply>
          <plus />
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
          <apply>
            <times />
            <ci>beta_0</ci>
            <apply>
              <minus />
              <ci>lambda</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="length_independent_tension">
    <variable cmeta:id="length_independent_tension.T_ref" initial_value="56.2" name="T_ref" public_interface="out" units="N_per_mm2" />
    <variable cmeta:id="length_independent_tension.T_Base" name="T_Base" public_interface="out" units="N_per_mm2" />
    <variable cmeta:id="length_independent_tension.z" name="z" public_interface="in" units="dimensionless" />
    <variable cmeta:id="length_independent_tension.z_max" name="z_max" public_interface="in" units="dimensionless" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>T_Base</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>T_ref</ci>
            <ci>z</ci>
          </apply>
          <ci>z_max</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="isometric_tension">
    <variable cmeta:id="isometric_tension_T0" name="T_0" public_interface="out" units="N_per_mm2" />
    <variable cmeta:id="isometric_tension.T_Base" name="T_Base" public_interface="in" units="N_per_mm2" />
    <variable cmeta:id="isometric_tension.overlap" name="overlap" public_interface="in" units="dimensionless" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>T_0</ci>
        <apply>
          <times />
          <ci>T_Base</ci>
          <ci>overlap</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Cross_Bridges">
    <variable cmeta:id="Cross_Bridges.time" name="time" public_interface="in" units="ms" />
    <variable cmeta:id="Cross_Bridges.dExtensionRatiodt" name="dExtensionRatiodt" public_interface="in" units="per_ms" />
    <variable cmeta:id="Cross_Bridges.Q" name="Q" units="dimensionless" />
    <variable cmeta:id="Cross_Bridges.a" initial_value="0.35" name="a" units="dimensionless" />
    <variable cmeta:id="Cross_Bridges.Q_1" initial_value="0" name="Q_1" units="dimensionless" />
    <variable cmeta:id="Cross_Bridges.Q_2" initial_value="0" name="Q_2" units="dimensionless" />
    <variable cmeta:id="Cross_Bridges.Q_3" initial_value="0" name="Q_3" units="dimensionless" />
    <variable cmeta:id="Cross_Bridges.A_1" initial_value="-29" name="A_1" units="dimensionless" />
    <variable cmeta:id="Cross_Bridges.A_2" initial_value="138" name="A_2" units="dimensionless" />
    <variable cmeta:id="Cross_Bridges.A_3" initial_value="129" name="A_3" units="dimensionless" />
    <variable cmeta:id="Cross_Bridges.alpha_1" initial_value="0.03" name="alpha_1" units="per_ms" />
    <variable cmeta:id="Cross_Bridges.alpha_2" initial_value="0.13" name="alpha_2" units="per_ms" />
    <variable cmeta:id="Cross_Bridges.alpha_3" initial_value="0.625" name="alpha_3" units="per_ms" />
    <variable cmeta:id="Cross_Bridges.T_0" name="T_0" public_interface="in" units="N_per_mm2" />
    <variable cmeta:id="Cross_Bridges_Tension" name="Tension" public_interface="out" units="N_per_mm2" />
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq />
        <ci>Q</ci>
        <apply>
          <plus />
          <ci>Q_1</ci>
          <ci>Q_2</ci>
          <ci>Q_3</ci>
        </apply>
      </apply>
      <apply>
        <eq />
        <ci>Tension</ci>
        <piecewise>
          <piece>
            <apply>
              <divide />
              <apply>
                <times />
                <ci>T_0</ci>
                <apply>
                  <plus />
                  <apply>
                    <times />
                    <ci>a</ci>
                    <ci>Q</ci>
                  </apply>
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                </apply>
              </apply>
              <apply>
                <minus />
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                <ci>Q</ci>
              </apply>
            </apply>
            <apply>
              <lt />
              <ci>Q</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">0</cn>
            </apply>
          </piece>
          <otherwise>
            <apply>
              <divide />
              <apply>
                <times />
                <ci>T_0</ci>
                <apply>
                  <plus />
                  <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                  <apply>
                    <times />
                    <apply>
                      <plus />
                      <ci>a</ci>
                      <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2</cn>
                    </apply>
                    <ci>Q</ci>
                  </apply>
                </apply>
              </apply>
              <apply>
                <plus />
                <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
                <ci>Q</ci>
              </apply>
            </apply>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Q_1</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <times />
            <ci>A_1</ci>
            <ci>dExtensionRatiodt</ci>
          </apply>
          <apply>
            <times />
            <ci>alpha_1</ci>
            <ci>Q_1</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Q_2</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <times />
            <ci>A_2</ci>
            <ci>dExtensionRatiodt</ci>
          </apply>
          <apply>
            <times />
            <ci>alpha_2</ci>
            <ci>Q_2</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Q_3</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <times />
            <ci>A_3</ci>
            <ci>dExtensionRatiodt</ci>
          </apply>
          <apply>
            <times />
            <ci>alpha_3</ci>
            <ci>Q_3</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <connection>
    <map_components component_1="tropomyosin" component_2="length_independent_tension" />
    <map_variables variable_1="z" variable_2="z" />
    <map_variables variable_1="z_max" variable_2="z_max" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="Myofilaments" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="filament_overlap" component_2="tropomyosin" />
    <map_variables variable_1="beta_0" variable_2="beta_0" />
  </connection>
  <connection>
    <map_components component_1="Myofilaments" component_2="filament_overlap" />
    <map_variables variable_1="lambda" variable_2="lambda" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="Cross_Bridges" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="Myofilaments" component_2="Cross_Bridges" />
    <map_variables variable_1="dExtensionRatiodt" variable_2="dExtensionRatiodt" />
  </connection>
  <connection>
    <map_components component_1="length_independent_tension" component_2="troponin" />
    <map_variables variable_1="T_ref" variable_2="T_ref" />
  </connection>
  <connection>
    <map_components component_1="isometric_tension" component_2="Cross_Bridges" />
    <map_variables variable_1="T_0" variable_2="T_0" />
  </connection>
  <connection>
    <map_components component_1="length_independent_tension" component_2="isometric_tension" />
    <map_variables variable_1="T_Base" variable_2="T_Base" />
  </connection>
  <connection>
    <map_components component_1="Cross_Bridges" component_2="troponin" />
    <map_variables variable_1="Tension" variable_2="Tension" />
  </connection>
  <connection>
    <map_components component_1="intracellular_ion_concentrations" component_2="tropomyosin" />
    <map_variables variable_1="Ca_b" variable_2="Ca_b" />
  </connection>
  <connection>
    <map_components component_1="Myofilaments" component_2="tropomyosin" />
    <map_variables variable_1="lambda" variable_2="lambda" />
  </connection>
  <connection>
    <map_components component_1="troponin" component_2="tropomyosin" />
    <map_variables variable_1="gamma_trpn" variable_2="gamma_trpn" />
    <map_variables variable_1="Ca_TRPN_Max" variable_2="Ca_TRPN_Max" />
    <map_variables variable_1="k_on" variable_2="k_on" />
    <map_variables variable_1="k_Ref_off" variable_2="k_Ref_off" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="intracellular_ion_concentrations" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="intracellular_ion_concentrations" component_2="troponin" />
    <map_variables variable_1="Ca_i" variable_2="Ca_i" />
    <map_variables variable_1="TRPN" variable_2="TRPN" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="tropomyosin" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="troponin" component_2="intracellular_ion_concentrations" />
    <map_variables variable_1="J_TRPN" variable_2="J_TRPN" />
    <map_variables variable_1="Ca_TRPN_Max" variable_2="Ca_TRPN_Max" />
  </connection>
  <connection>
    <map_components component_1="filament_overlap" component_2="isometric_tension" />
    <map_variables variable_1="overlap" variable_2="overlap" />
  </connection>
  <rdf:RDF xmlns:bqmodel="http://biomodels.net/model-qualifiers/" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:ro="http://www.obofoundry.org/ro/ro.owl#" xmlns:opb="http://bhi.washington.edu/OPB#">
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  </rdf:RDF>
</model>

