// modelName ostby_model_2008
// isDescribedBy 19165313
def model ostby_oyehaug_einevoll_nagelhus_plahte_zeuthen_voipio_lloyd_ottersen_omholt_2008 as
  // Astrocytic processes explaining neural activity-induced shrinkage of extraneuronal space
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This cellML model is known to run in OpenCell and COR to recreate the published results. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: Neuronal stimulation causes approximately 30% shrinkage of the extracellular space (ECS) between neurons and surrounding astrocytes in grey and white matter under experimental conditions. Despite its possible implications for a proper understanding of basic aspects of potassium clearance and astrocyte function, the phenomenon remains unexplained. Here we present a dynamic model that accounts for current experimental data related to the shrinkage phenomenon in wild-type as well as in gene knockout individuals. We find that neuronal release of potassium and uptake of sodium during stimulation, astrocyte uptake of potassium, sodium, and chloride in passive channels, action of the Na/K/ATPase pump, and osmotically driven transport of water through the astrocyte membrane together seem sufficient for generating ECS shrinkage as such. However, when taking into account ECS and astrocyte ion concentrations observed in connection with neuronal stimulation, the actions of the Na(+)/K(+)/Cl(-) (NKCC1) and the Na(+)/HCO(3) (-) (NBC) cotransporters appear to be critical determinants for achieving observed quantitative levels of ECS shrinkage. Considering the current state of knowledge, the model framework appears sufficiently detailed and constrained to guide future key experiments and pave the way for more comprehensive astroglia-neuron interaction models for normal as well as pathophysiological situations.
  //
  // model diagram
  //
  // Schematic diagram of the model. In the excited state there is an exchange of sodium and potassium ions across the neuron membrane and the cotransporters in the astrocyte are active.
  //
  // The original paper reference is cited below:
  //
  // Astrocytic mechanisms explaining neural-activity-induced shrinkage of extraneuronal space, Ostby I, Oyehaug L, Einevoll GT, Nagelhus EA, Plahte E, Zeuthen T, Lloyd CM, Ottersen OP, and Omholt SW, 2009, PLoS Computational Biology, 5, 1, e1000272. PubMed ID: 19165313 (http://www.ncbi.nlm.nih.gov/pubmed/19165313)
  def unit millimolar_micrometre_per_second as
    unit second {expo: -1.0};
    unit metre {pref: micro};
    unit millimolar;
  enddef;
  def unit micrometre_per_centimetre as
    unit metre {expo: -1.0, pref: centi};
    unit metre {pref: micro};
  enddef;
  def unit C_per_cm2 as
    unit metre {expo: -2.0, pref: centi};
    unit coulomb;
  enddef;
  def unit C_per_mol as
    unit mole {expo: -1.0};
    unit coulomb;
  enddef;
  def unit cm2_millimolar_micrometre_per_mol as
    unit mole {expo: -1.0};
    unit metre {expo: 2.0, pref: centi};
    unit millimolar;
    unit metre {pref: micro};
  enddef;
  def unit cm2 as
    unit metre {expo: 2.0, pref: centi};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit C as
    unit coulomb;
  enddef;
  def unit micrometre_millimolar_per_second as
    unit millimolar;
    unit second {expo: -1.0};
    unit metre {pref: micro};
  enddef;
  def unit per_mole as
    unit mole {expo: -1.0};
  enddef;
  def unit per_ohm_cm2 as
    unit metre {expo: -2.0, pref: centi};
    unit ohm {expo: -1.0};
  enddef;
  def unit mole_per_cm2_second as
    unit metre {expo: -2.0, pref: centi};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit first_order_rate_constant as
    unit millisecond {expo: -1.0};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1.0};
  enddef;
  def unit millimolar_micrometre as
    unit metre {pref: micro};
    unit millimolar;
  enddef;
  def unit millimole_per_cm2 as
    unit millimole;
    unit metre {expo: -2.0, pref: centi};
  enddef;
  def unit micrometre_per_millimolar as
    unit millimolar {expo: -1.0};
    unit metre {pref: micro};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1.0};
  enddef;
  def unit cm3 as
    unit metre {expo: 3.0, pref: centi};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1.0};
    unit kelvin {expo: -1.0};
  enddef;
  def unit millimole_per_cm2_millisecond as
    unit second {expo: -1.0, pref: milli};
    unit metre {expo: -2.0, pref: centi};
    unit mole {pref: milli};
  enddef;
  def unit millimole as
    unit mole {pref: milli};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit millimole_per_cm2_second as
    unit second {expo: -1.0};
    unit metre {expo: -2.0, pref: centi};
    unit mole {pref: milli};
  enddef;
  def unit micrometre_per_millimolar_second as
    unit millimolar {expo: -1.0};
    unit metre {pref: micro};
    unit second {expo: -1.0};
  enddef;
  def unit cm_per_millimolar_second as
    unit millimolar {expo: -1.0};
    unit metre {pref: centi};
    unit second {expo: -1.0};
  enddef;
  def unit C_per_cm2_s as
    unit coulomb;
    unit metre {expo: -2.0, pref: centi};
    unit second {expo: -1.0};
  enddef;
  def unit picoampere as
    unit ampere {pref: pico};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp wi as
    var wi: micrometre {init: 0.061, pub: out};
    var Lp: cm_per_millimolar_second {pub: in};
    var Xi: millimolar_micrometre {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Clo: millimolar {pub: in};
    var HCO3o: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Cli: millimolar {pub: in};
    var HCO3i: millimolar {pub: in};
    var time: second {pub: in};
    ode(wi, time) = 1{micrometre_per_centimetre}*Lp*(Nai+Ki+Cli+HCO3i+Xi/wi-(Nao+Ko+Clo+HCO3o));
  enddef;

  def comp wo as
    var wo: micrometre {pub: out};
    var w_tot: micrometre {init: 0.0879};
    var wi: micrometre {pub: in};
    wo = w_tot-wi;
  enddef;

  def comp N_Nai as
    // isComputationalComponentFor: #property_0; physicalPropertyOf #entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of sodium ions in the intracellular space of the astrocyte.
    var N_Nai: millimolar_micrometre {init: 0.99796, pub: out};
    var dN_Nai_dt: millimolar_micrometre_per_second {pub: out};
    var gNa: per_ohm_cm2 {pub: in};
    // isComputationalComponentFor: #property_1; physicalPropertyOf #entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Nernst potential of sodium for the astrocytic membrane.
    var ENa: volt {pub: in};
    // isComputationalComponentFor: #property_2; physicalPropertyOf #entity_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_01364
    // description: Astrocytic membrane potential.
    var Vm: volt {pub: in};
    var J_NaKATPase: mole_per_cm2_second {pub: in};
    var F: C_per_mol {pub: in};
    var theta_NKCC1: dimensionless {pub: in};
    // isComputationalComponentFor: #property_3; #process_0; description ; #mediator_0; #entity_9; hasPhysicalDefinition http://purl.obolibrary.org/obo/PR_000014925; #sink_2; hasMultiplier 1.0; hasPhysicalEntityReference #entity_0; #sink_1; hasMultiplier 1.0; #entity_8; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29103; #sink_0; hasMultiplier 1.0; #entity_7; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17996; #source_2; hasMultiplier 1.0; hasPhysicalEntityReference #entity_6; #source_1; hasMultiplier 1.0; #entity_5; part_of #entity_4; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29103; #source_0; hasMultiplier 1.0; #entity_3; part_of #entity_4; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17996; name Ion flux through sodium-potassium-chloride cotransporter; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Ion flux through the sodium-potassium-chloride cotransporter.
    var J_NKCC1: millimolar_micrometre_per_second {pub: in};
    var theta_NBC: dimensionless {pub: in};
    // isComputationalComponentFor: #property_4; #process_1; description ; #mediator_1; #entity_12; hasPhysicalDefinition http://purl.obolibrary.org/obo/PR_000015160; #sink_4; hasMultiplier 1.0; hasPhysicalEntityReference #entity_11; #sink_3; hasMultiplier 1.0; hasPhysicalEntityReference #entity_0; #source_4; hasMultiplier 1.0; #entity_10; part_of #entity_4; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17544; #source_3; hasMultiplier 1.0; hasPhysicalEntityReference #entity_6; name Ion flux through sodium bicarbonate cotransporter; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Ion flux through sodium bicarbonate cotransporter
    var J_NBC: millimolar_micrometre_per_second {pub: in};
    var time: second {pub: in};
    ode(N_Nai, time) = dN_Nai_dt;
    dN_Nai_dt = theta_NKCC1*J_NKCC1+theta_NBC*J_NBC-1e10{cm2_millimolar_micrometre_per_mol}*(gNa/F*(Vm-ENa)+3{dimensionless}*J_NaKATPase);
  enddef;

  def comp N_Ki as
    // isComputationalComponentFor: #property_5; physicalPropertyOf #entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of potassium ions in the intracellular space of the astrocyte
    var N_Ki: millimolar_micrometre {init: 5.52782, pub: out};
    var dN_Ki_dt: millimolar_micrometre_per_second {pub: out};
    var gK: per_ohm_cm2 {pub: in};
    // isComputationalComponentFor: #property_6; physicalPropertyOf #entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Nernst potential of K ion for the astrosytic membrane.
    var EK: volt {pub: in};
    // isComputationalComponentFor: #property_7; physicalPropertyOf #entity_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_01364
    // description: Astrocytic membrane potential.
    var Vm: volt {pub: in};
    var J_NaKATPase: mole_per_cm2_second {pub: in};
    var F: C_per_mol {pub: in};
    var theta_NKCC1: dimensionless {pub: in};
    // isComputationalComponentFor: #property_8; physicalPropertyOf #process_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Ion flux through the sodium-potassium-chloride cotransporter.
    var J_NKCC1: millimolar_micrometre_per_second {pub: in};
    var theta_KCC1: dimensionless {pub: in};
    // isComputationalComponentFor: #property_9; physicalPropertyOf #process_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Ion flux through the potassium-cloride cotransporter.
    var J_KCC1: millimolar_micrometre_per_second {pub: in};
    var time: second {pub: in};
    ode(N_Ki, time) = dN_Ki_dt;
    dN_Ki_dt = theta_NKCC1*J_NKCC1+theta_KCC1*J_KCC1+1e10{cm2_millimolar_micrometre_per_mol}*2{dimensionless}*J_NaKATPase-1e10{cm2_millimolar_micrometre_per_mol}*gK/F*(Vm-EK);
  enddef;

  def comp N_HCO3i as
    // isComputationalComponentFor: #property_10; #entity_11; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:17544; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of HCO3 ions
    var N_HCO3i: millimolar_micrometre {init: 0.58804, pub: out};
    var dN_HCO3i_dt: millimolar_micrometre_per_second {pub: out};
    var theta_NBC: dimensionless {pub: in};
    // isComputationalComponentFor: #property_11; physicalPropertyOf #process_1; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Ion flux through sodium bicarbonate cotransporter
    var J_NBC: millimolar_micrometre_per_second {pub: in};
    var time: second {pub: in};
    ode(N_HCO3i, time) = dN_HCO3i_dt;
    dN_HCO3i_dt = 2{dimensionless}*theta_NBC*J_NBC;
  enddef;

  def comp N_Cli as
    // isComputationalComponentFor: #property_12; physicalPropertyOf #entity_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Time rate of change in the number of Cl- ions in the intracellular space of the astrocyte
    var N_Cli: millimolar_micrometre {init: 0.32879, pub: out};
    var dN_Ki_dt: millimolar_micrometre_per_second {pub: in};
    var dN_Nai_dt: millimolar_micrometre_per_second {pub: in};
    var dN_HCO3i_dt: millimolar_micrometre_per_second {pub: in};
    var time: second {pub: in};
    ode(N_Cli, time) = dN_Ki_dt+dN_Nai_dt+dN_HCO3i_dt;
  enddef;

  def comp N_Nao as
    // isComputationalComponentFor: #property_13; physicalPropertyOf #entity_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of Na ions in the extracellular space.
    var N_Nao: millimolar_micrometre {init: 4.301041, pub: out};
    var y: dimensionless {pub: in};
    var kc: micrometre_millimolar_per_second {pub: in};
    var gNa: per_ohm_cm2 {pub: in};
    // isComputationalComponentFor: #property_14; physicalPropertyOf #entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Nernst potential of sodium for the astrocytic membrane.
    var ENa: volt {pub: in};
    // isComputationalComponentFor: #property_15; physicalPropertyOf #entity_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_01364
    // description: Astrocytic membrane potential.
    var Vm: volt {pub: in};
    var J_NaKATPase: mole_per_cm2_second {pub: in};
    var F: C_per_mol {pub: in};
    var theta_NKCC1: dimensionless {pub: in};
    // isComputationalComponentFor: #property_16; physicalPropertyOf #process_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Ion flux through the sodium-potassium-chloride cotransporter.
    var J_NKCC1: millimolar_micrometre_per_second {pub: in};
    var theta_NBC: dimensionless {pub: in};
    // isComputationalComponentFor: #property_17; physicalPropertyOf #process_1; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Ion flux through sodium bicarbonate cotransporter
    var J_NBC: millimolar_micrometre_per_second {pub: in};
    var time: second {pub: in};
    ode(N_Nao, time) = 1e10{cm2_millimolar_micrometre_per_mol}*(gNa/F*(Vm-ENa)+3{dimensionless}*J_NaKATPase)-(theta_NKCC1*J_NKCC1+theta_NBC*J_NBC+kc*y);
  enddef;

  def comp N_Ko as
    // isComputationalComponentFor: #property_18; physicalPropertyOf #entity_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of potassium ions in the extracellular space.
    var N_Ko: millimolar_micrometre {init: 0.0807, pub: out};
    var y: dimensionless {pub: in};
    var kc: micrometre_millimolar_per_second {pub: in};
    var gK: per_ohm_cm2 {pub: in};
    // isComputationalComponentFor: #property_19; physicalPropertyOf #entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Nernst potential of K ion for the astrosytic membrane.
    var EK: volt {pub: in};
    // isComputationalComponentFor: #property_20; physicalPropertyOf #entity_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_01364
    // description: Astrocytic membrane potential.
    var Vm: volt {pub: in};
    var J_NaKATPase: mole_per_cm2_second {pub: in};
    var F: C_per_mol {pub: in};
    var theta_NKCC1: dimensionless {pub: in};
    // isComputationalComponentFor: #property_21; physicalPropertyOf #process_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Ion flux through the sodium-potassium-chloride cotransporter.
    var J_NKCC1: millimolar_micrometre_per_second {pub: in};
    var theta_KCC1: dimensionless {pub: in};
    // isComputationalComponentFor: #property_22; physicalPropertyOf #process_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Ion flux through the potassium-cloride cotransporter.
    var J_KCC1: millimolar_micrometre_per_second {pub: in};
    var time: second {pub: in};
    ode(N_Ko, time) = 1e10{cm2_millimolar_micrometre_per_mol}*gK/F*(Vm-EK)+kc*y-(theta_NKCC1*J_NKCC1+theta_KCC1*J_KCC1+1e10{cm2_millimolar_micrometre_per_mol}*2{dimensionless}*J_NaKATPase);
  enddef;

  def comp N_HCO3o as
    // isComputationalComponentFor: #property_23; physicalPropertyOf #entity_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of HCO3 ions in the extracellular space.
    var N_HCO3o: millimolar_micrometre {init: 0.432552, pub: out};
    var theta_NBC: dimensionless {pub: in};
    // isComputationalComponentFor: #property_24; physicalPropertyOf #process_1; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Ion flux through sodium bicarbonate cotransporter
    var J_NBC: millimolar_micrometre_per_second {pub: in};
    var time: second {pub: in};
    ode(N_HCO3o, time) = -2{dimensionless}*theta_NBC*J_NBC;
  enddef;

  def comp N_Clo as
    var N_Clo: millimolar_micrometre {pub: out};
    // isComputationalComponentFor: #property_25; #entity_4; hasPhysicalDefinition http://identifiers.org/fma/FMA:70022; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of potassium ions in the extracellular space.
    var N_Ko: millimolar_micrometre {pub: in};
    // isComputationalComponentFor: #property_26; physicalPropertyOf #entity_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of Na ions in the extracellular space.
    var N_Nao: millimolar_micrometre {pub: in};
    // isComputationalComponentFor: #property_27; physicalPropertyOf #entity_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of HCO3 ions in the extracellular space.
    var N_HCO3o: millimolar_micrometre {pub: in};
    N_Clo = N_Nao+N_Ko-N_HCO3o;
  enddef;

  def comp Nernst_potentials as
    // isComputationalComponentFor: #property_28; physicalPropertyOf #entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Nernst potential of sodium for the astrocytic membrane.
    var ENa: volt {pub: out};
    // isComputationalComponentFor: #property_29; physicalPropertyOf #entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Nernst potential of K ion for the astrosytic membrane.
    var EK: volt {pub: out};
    // isComputationalComponentFor: #property_30; physicalPropertyOf #entity_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Nernst potential of the Cl- ion for the astrocytic potential.
    var ECl: volt {pub: out};
    var T: kelvin {pub: in};
    var R: J_per_mol_K {pub: in};
    var F: C_per_mol {pub: in};
    var Nao: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Clo: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Cli: millimolar {pub: in};
    ENa = R*T/(1{dimensionless}*F)*ln(Nao/Nai);
    EK = R*T/(1{dimensionless}*F)*ln(Ko/Ki);
    ECl = R*T/(-1{dimensionless}*F)*ln(Clo/Cli);
  enddef;

  def comp J_KCC1 as
    // isComputationalComponentFor: #property_31; #process_2; description ; #mediator_2; #entity_13; hasPhysicalDefinition http://purl.obolibrary.org/obo/PR_000014927; #sink_6; hasMultiplier 1.0; hasPhysicalEntityReference #entity_7; #sink_5; hasMultiplier 1.0; hasPhysicalEntityReference #entity_8; #source_6; hasMultiplier 1.0; hasPhysicalEntityReference #entity_3; #source_5; hasMultiplier 1.0; hasPhysicalEntityReference #entity_5; name K+ and Cl- ion flux through the astrocytic membrane.; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Ion flux through the potassium-cloride cotransporter.
    var J_KCC1: millimolar_micrometre_per_second {pub: out};
    var gKCC1: per_ohm_cm2 {init: 1e-6};
    var ft: dimensionless;
    var T: kelvin {pub: in};
    var R: J_per_mol_K {pub: in};
    var F: C_per_mol {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Clo: millimolar {pub: in};
    var Cli: millimolar {pub: in};
    var time: second {pub: in};
    J_KCC1 = 1e10{cm2_millimolar_micrometre_per_mol}*gKCC1*ft/F*R*T/F*ln(Ko*Clo/(Ki*Cli));
    ft = sel
      case (time >= 10{second}) and (time < 20{second}):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
  enddef;

  def comp J_NBC as
    // isComputationalComponentFor: #property_32; physicalPropertyOf #process_1; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Ion flux through sodium bicarbonate cotransporter
    var J_NBC: millimolar_micrometre_per_second {pub: out};
    var gNBC: per_ohm_cm2 {init: 9.03e-5, pub: out};
    // isComputationalComponentFor: #property_33; #entity_2; part_of #entity_1; hasPhysicalDefinition http://identifiers.org/fma/FMA:30322; hasPhysicalDefinition http://identifiers.org/opb/OPB_01364
    // description: Astrocytic membrane potential.
    var Vm: volt {pub: in};
    // isComputationalComponentFor: #property_34; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Reversal Nernst potential of the sodium bicarbonate cotransporter
    var ENBC: volt {pub: in};
    var F: C_per_mol {pub: in};
    J_NBC = 1e10{cm2_millimolar_micrometre_per_mol}*gNBC/F*(Vm-ENBC);
  enddef;

  def comp J_NKCC1 as
    // isComputationalComponentFor: #property_35; physicalPropertyOf #process_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Ion flux through the sodium-potassium-chloride cotransporter.
    var J_NKCC1: millimolar_micrometre_per_second {pub: out};
    var gNKCC1: per_ohm_cm2 {init: 5.54e-6};
    var ft: dimensionless;
    var T: kelvin {pub: in};
    var R: J_per_mol_K {pub: in};
    var F: C_per_mol {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Clo: millimolar {pub: in};
    var Cli: millimolar {pub: in};
    var time: second {pub: in};
    J_NKCC1 = 1e10{cm2_millimolar_micrometre_per_mol}*gNKCC1*ft/F*R*T/F*ln(Nao/Nai*Ko/Ki*sqr(Clo/Cli));
    ft = sel
      case (time >= 10{second}) and (time < 20{second}):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
  enddef;

  def comp ENBC as
    // isComputationalComponentFor: #property_36; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Reversal Nernst potential of the sodium bicarbonate cotransporter
    var ENBC: volt {pub: out};
    var zNBC: dimensionless {init: -1};
    var T: kelvin {pub: in};
    var R: J_per_mol_K {pub: in};
    var F: C_per_mol {pub: in};
    var HCO3o: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var HCO3i: millimolar {pub: in};
    ENBC = R*T/(zNBC*F)*ln(Nao/Nai*sqr(HCO3o)/sqr(HCO3i));
  enddef;

  def comp membrane as
    // isComputationalComponentFor: #property_37; physicalPropertyOf #entity_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_01364
    // description: Astrocytic membrane potential.
    var Vm: volt {pub: out};
    var F: C_per_mol {pub: in};
    var J_NaKATPase: mole_per_cm2_second {pub: in};
    // isComputationalComponentFor: #property_38; physicalPropertyOf #entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Nernst potential of sodium for the astrocytic membrane.
    var ENa: volt {pub: in};
    // isComputationalComponentFor: #property_39; physicalPropertyOf #entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Nernst potential of K ion for the astrosytic membrane.
    var EK: volt {pub: in};
    // isComputationalComponentFor: #property_40; physicalPropertyOf #entity_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Nernst potential of the Cl- ion for the astrocytic potential.
    var ECl: volt {pub: in};
    // isComputationalComponentFor: #property_41; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Reversal Nernst potential of the sodium bicarbonate cotransporter
    var ENBC: volt {pub: in};
    var gNa: per_ohm_cm2 {pub: in};
    var gK: per_ohm_cm2 {pub: in};
    var gCl: per_ohm_cm2 {pub: in};
    var gNBC: per_ohm_cm2 {pub: in};
    var theta_NBC: dimensionless {pub: in};
    var time: second {pub: in};
    Vm = (gNa*ENa+gK*EK+gCl*ECl+theta_NBC*gNBC*ENBC-J_NaKATPase*F)/(gNa+gK+gCl+theta_NBC*gNBC);
  enddef;

  def comp J_NaKATPase as
    var J_NaKATPase: mole_per_cm2_second {pub: out};
    var Pmax: mole_per_cm2_second {init: 1.4207e-10};
    var K_Nai: millimolar {init: 10};
    var K_Ko: millimolar {init: 1.5};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    J_NaKATPase = Pmax*pow(Nai, 1.5{dimensionless})/(pow(Nai, 1.5{dimensionless})+pow(K_Nai, 1.5{dimensionless}))*Ko/(Ko+K_Ko);
  enddef;

  def comp I_K as
    // isComputationalComponentFor: #property_42; #process_3; description ; #sink_7; hasMultiplier 1.0; hasPhysicalEntityReference #entity_8; #source_7; hasMultiplier 1.0; hasPhysicalEntityReference #entity_5; name K+ ions flow across astrocytic membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Flux of potassium ions across astrocytic membrane.
    var I_K: millimolar_micrometre_per_second {pub: out};
    var gK: per_ohm_cm2 {pub: in};
    // isComputationalComponentFor: #property_43; physicalPropertyOf #entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Nernst potential of K ion for the astrosytic membrane.
    var EK: volt {pub: in};
    // isComputationalComponentFor: #property_44; physicalPropertyOf #entity_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_01364
    // description: Astrocytic membrane potential.
    var Vm: volt {pub: in};
    var F: C_per_mol {pub: in};
    var nA: per_mole {pub: in};
    var elementary_charge: C {pub: in};
    var J_NaKATPase: mole_per_cm2_second {pub: in};
    I_K = 1e10{cm2_millimolar_micrometre_per_mol}*2{dimensionless}*J_NaKATPase*F/(elementary_charge*nA)-1e10{cm2_millimolar_micrometre_per_mol}*gK/(elementary_charge*nA)*(Vm-EK);
  enddef;

  def comp I_Cl as
    // isComputationalComponentFor: #property_45; #process_4; description ; #sink_8; hasMultiplier 1.0; hasPhysicalEntityReference #entity_7; #source_8; hasMultiplier 1.0; hasPhysicalEntityReference #entity_3; name Cl- flow through astrocytic membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Cloride ion flux across astrocytic membrane.
    var I_Cl: millimolar_micrometre_per_second {pub: out};
    var gCl: per_ohm_cm2 {pub: in};
    // isComputationalComponentFor: #property_46; physicalPropertyOf #entity_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Nernst potential of the Cl- ion for the astrocytic potential.
    var ECl: volt {pub: in};
    // isComputationalComponentFor: #property_47; physicalPropertyOf #entity_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_01364
    // description: Astrocytic membrane potential.
    var Vm: volt {pub: in};
    var nA: per_mole {pub: in};
    var elementary_charge: C {pub: in};
    I_Cl = 1e10{cm2_millimolar_micrometre_per_mol}*gCl/(elementary_charge*nA)*(Vm-ECl);
  enddef;

  def comp I_Na as
    // isComputationalComponentFor: #property_48; #process_5; description ; #sink_9; hasMultiplier 1.0; #entity_0; #entity_1; hasPhysicalDefinition http://identifiers.org/fma/FMA:54537; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29101; #source_9; hasMultiplier 1.0; #entity_6; part_of #entity_4; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29101; name Na+ ion flux across astrocytic membrane; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Na+ ion flux across astrocytic membrane.
    var I_Na: millimolar_micrometre_per_second {pub: out};
    var gNa: per_ohm_cm2 {pub: in};
    // isComputationalComponentFor: #property_49; physicalPropertyOf #entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_01581
    // description: Nernst potential of sodium for the astrocytic membrane.
    var ENa: volt {pub: in};
    // isComputationalComponentFor: #property_50; physicalPropertyOf #entity_2; hasPhysicalDefinition http://identifiers.org/opb/OPB_01364
    // description: Astrocytic membrane potential.
    var Vm: volt {pub: in};
    var F: C_per_mol {pub: in};
    var nA: per_mole {pub: in};
    var elementary_charge: C {pub: in};
    var J_NaKATPase: mole_per_cm2_second {pub: in};
    // isComputationalComponentFor: #property_51; physicalPropertyOf #process_1; hasPhysicalDefinition http://identifiers.org/opb/OPB_00593
    // description: Ion flux through sodium bicarbonate cotransporter
    var J_NBC: millimolar_micrometre_per_second {pub: in};
    I_Na = J_NBC-(1e10{cm2_millimolar_micrometre_per_mol}*gNa/(elementary_charge*nA)*(Vm-ENa)+1e10{cm2_millimolar_micrometre_per_mol}*3{dimensionless}*J_NaKATPase*F/(elementary_charge*nA));
  enddef;

  def comp model_parameters as
    var Nai: millimolar {pub: out};
    var Ki: millimolar {pub: out};
    var Cli: millimolar {pub: out};
    var HCO3i: millimolar {pub: out};
    var Nao: millimolar {pub: out};
    var Ko: millimolar {pub: out};
    var Clo: millimolar {pub: out};
    var HCO3o: millimolar {pub: out};
    var R: J_per_mol_K {init: 8.315, pub: out};
    var F: C_per_mol {init: 9.649e4, pub: out};
    var T: kelvin {init: 300, pub: out};
    var gNa: per_ohm_cm2 {init: 1.314e-4, pub: out};
    var gK: per_ohm_cm2 {init: 0.004, pub: out};
    var gCl: per_ohm_cm2 {init: 8.797e-5, pub: out};
    var elementary_charge: C {init: 1.6e-19, pub: out};
    var nA: per_mole {init: 6.0221415e23, pub: out};
    var Xi: millimolar_micrometre {init: 12.41, pub: out};
    var kc: micrometre_millimolar_per_second {init: 7.35e-2, pub: out};
    var theta_NBC: dimensionless {init: 1, pub: out};
    var theta_NKCC1: dimensionless {init: 1, pub: out};
    var theta_KCC1: dimensionless {init: 1, pub: out};
    var Lp: cm_per_millimolar_second {init: 2.1e-4, pub: out};
    var y: dimensionless {pub: out};
    var time: second {pub: in};
    // isComputationalComponentFor: #property_52; physicalPropertyOf #entity_8; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of potassium ions in the intracellular space of the astrocyte
    var N_Ki: millimolar_micrometre {pub: in};
    // isComputationalComponentFor: #property_53; physicalPropertyOf #entity_4; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of potassium ions in the extracellular space.
    var N_Ko: millimolar_micrometre {pub: in};
    // isComputationalComponentFor: #property_54; physicalPropertyOf #entity_0; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of sodium ions in the intracellular space of the astrocyte.
    var N_Nai: millimolar_micrometre {pub: in};
    // isComputationalComponentFor: #property_55; physicalPropertyOf #entity_6; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of Na ions in the extracellular space.
    var N_Nao: millimolar_micrometre {pub: in};
    // isComputationalComponentFor: #property_56; physicalPropertyOf #entity_7; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Time rate of change in the number of Cl- ions in the intracellular space of the astrocyte
    var N_Cli: millimolar_micrometre {pub: in};
    var N_Clo: millimolar_micrometre {pub: in};
    // isComputationalComponentFor: #property_57; physicalPropertyOf #entity_11; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of HCO3 ions
    var N_HCO3i: millimolar_micrometre {pub: in};
    // isComputationalComponentFor: #property_58; physicalPropertyOf #entity_10; hasPhysicalDefinition http://identifiers.org/opb/OPB_01001
    // description: Rate of change in the number of HCO3 ions in the extracellular space.
    var N_HCO3o: millimolar_micrometre {pub: in};
    var wi: micrometre {pub: in};
    var wo: micrometre {pub: in};
    var t0: second {init: 10};
    var t1: second {init: 20};
    var t2: second {init: 30};
    var alpha: dimensionless {init: 2};
    var beta: dimensionless {init: 14};
    var deltaT: second;
    var gamma_alpha_beta: dimensionless;
    var gamma_alpha: dimensionless;
    var gamma_beta: dimensionless;
    y = sel
      case (time >= t0) and (time <= t1):
        gamma_alpha_beta/(gamma_alpha*gamma_beta)*pow(1{dimensionless}-(time-t0)/deltaT, beta-1{dimensionless})*pow((time-t0)/deltaT, alpha-1{dimensionless});
      case (time > t1) and (time < t2):
        -1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    deltaT = t1-t0;
    gamma_alpha_beta = fact(alpha+beta-1{dimensionless});
    gamma_alpha = fact(alpha-1{dimensionless});
    gamma_beta = fact(beta-1{dimensionless});
    Ki = sel
      case N_Ki/wi > 0{millimolar}:
        N_Ki/wi;
      otherwise:
        1e-180{millimolar};
    endsel;
    Ko = sel
      case N_Ko/wo > 0{millimolar}:
        N_Ko/wo;
      otherwise:
        1e-180{millimolar};
    endsel;
    Nai = sel
      case N_Nai/wi > 0{millimolar}:
        N_Nai/wi;
      otherwise:
        1e-180{millimolar};
    endsel;
    Nao = sel
      case N_Nao/wo > 0{millimolar}:
        N_Nao/wo;
      otherwise:
        1e-180{millimolar};
    endsel;
    Cli = sel
      case N_Cli/wi > 0{millimolar}:
        N_Cli/wi;
      otherwise:
        1e-180{millimolar};
    endsel;
    Clo = sel
      case N_Clo/wo > 0{millimolar}:
        N_Clo/wo;
      otherwise:
        1e-180{millimolar};
    endsel;
    HCO3i = sel
      case N_HCO3i/wi > 0{millimolar}:
        N_HCO3i/wi;
      otherwise:
        1e-180{millimolar};
    endsel;
    HCO3o = sel
      case N_HCO3o/wo > 0{millimolar}:
        N_HCO3o/wo;
      otherwise:
        1e-180{millimolar};
    endsel;
  enddef;
  def map between Nernst_potentials and I_K for
    vars EK and EK;
  enddef;
  def map between environment and N_Ko for
    vars time and time;
  enddef;
  def map between model_parameters and N_HCO3i for
    vars theta_NBC and theta_NBC;
  enddef;
  def map between J_KCC1 and N_Ko for
    vars J_KCC1 and J_KCC1;
  enddef;
  def map between membrane and N_Ko for
    vars Vm and Vm;
  enddef;
  def map between model_parameters and I_Na for
    vars gNa and gNa;
    vars nA and nA;
    vars elementary_charge and elementary_charge;
    vars F and F;
  enddef;
  def map between model_parameters and J_NBC for
    vars F and F;
  enddef;
  def map between N_Ki and N_Cli for
    vars dN_Ki_dt and dN_Ki_dt;
  enddef;
  def map between Nernst_potentials and N_Ki for
    vars EK and EK;
  enddef;
  def map between J_NKCC1 and N_Ko for
    vars J_NKCC1 and J_NKCC1;
  enddef;
  def map between membrane and I_Cl for
    vars Vm and Vm;
  enddef;
  def map between J_NaKATPase and N_Ko for
    vars J_NaKATPase and J_NaKATPase;
  enddef;
  def map between environment and J_NKCC1 for
    vars time and time;
  enddef;
  def map between wo and model_parameters for
    vars wo and wo;
  enddef;
  def map between model_parameters and N_HCO3o for
    vars theta_NBC and theta_NBC;
  enddef;
  def map between Nernst_potentials and N_Nao for
    vars ENa and ENa;
  enddef;
  def map between model_parameters and Nernst_potentials for
    vars Nai and Nai;
    vars Ko and Ko;
    vars Clo and Clo;
    vars Cli and Cli;
    vars F and F;
    vars R and R;
    vars Nao and Nao;
    vars T and T;
    vars Ki and Ki;
  enddef;
  def map between J_NKCC1 and N_Ki for
    vars J_NKCC1 and J_NKCC1;
  enddef;
  def map between ENBC and membrane for
    vars ENBC and ENBC;
  enddef;
  def map between J_KCC1 and N_Ki for
    vars J_KCC1 and J_KCC1;
  enddef;
  def map between J_NBC and membrane for
    vars gNBC and gNBC;
  enddef;
  def map between membrane and N_Nai for
    vars Vm and Vm;
  enddef;
  def map between J_NKCC1 and N_Nao for
    vars J_NKCC1 and J_NKCC1;
  enddef;
  def map between J_NBC and N_HCO3o for
    vars J_NBC and J_NBC;
  enddef;
  def map between model_parameters and N_Nai for
    vars gNa and gNa;
    vars theta_NBC and theta_NBC;
    vars theta_NKCC1 and theta_NKCC1;
    vars F and F;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between membrane and N_Nao for
    vars Vm and Vm;
  enddef;
  def map between J_NaKATPase and I_K for
    vars J_NaKATPase and J_NaKATPase;
  enddef;
  def map between Nernst_potentials and I_Cl for
    vars ECl and ECl;
  enddef;
  def map between J_NaKATPase and I_Na for
    vars J_NaKATPase and J_NaKATPase;
  enddef;
  def map between environment and N_HCO3i for
    vars time and time;
  enddef;
  def map between N_Ki and model_parameters for
    vars N_Ki and N_Ki;
  enddef;
  def map between model_parameters and J_NKCC1 for
    vars Nai and Nai;
    vars Ko and Ko;
    vars Clo and Clo;
    vars Cli and Cli;
    vars F and F;
    vars R and R;
    vars Nao and Nao;
    vars T and T;
    vars Ki and Ki;
  enddef;
  def map between environment and wi for
    vars time and time;
  enddef;
  def map between N_Ko and N_Clo for
    vars N_Ko and N_Ko;
  enddef;
  def map between N_HCO3o and model_parameters for
    vars N_HCO3o and N_HCO3o;
  enddef;
  def map between environment and J_KCC1 for
    vars time and time;
  enddef;
  def map between model_parameters and I_K for
    vars nA and nA;
    vars elementary_charge and elementary_charge;
    vars F and F;
    vars gK and gK;
  enddef;
  def map between J_NBC and N_Nai for
    vars J_NBC and J_NBC;
  enddef;
  def map between membrane and J_NBC for
    vars Vm and Vm;
  enddef;
  def map between J_NBC and N_Nao for
    vars J_NBC and J_NBC;
  enddef;
  def map between environment and N_Nai for
    vars time and time;
  enddef;
  def map between Nernst_potentials and N_Nai for
    vars ENa and ENa;
  enddef;
  def map between model_parameters and I_Cl for
    vars nA and nA;
    vars elementary_charge and elementary_charge;
    vars gCl and gCl;
  enddef;
  def map between Nernst_potentials and I_Na for
    vars ENa and ENa;
  enddef;
  def map between N_Nao and N_Clo for
    vars N_Nao and N_Nao;
  enddef;
  def map between J_NaKATPase and N_Nao for
    vars J_NaKATPase and J_NaKATPase;
  enddef;
  def map between N_Cli and model_parameters for
    vars N_Cli and N_Cli;
  enddef;
  def map between membrane and I_K for
    vars Vm and Vm;
  enddef;
  def map between J_NKCC1 and N_Nai for
    vars J_NKCC1 and J_NKCC1;
  enddef;
  def map between environment and N_Ki for
    vars time and time;
  enddef;
  def map between N_HCO3i and model_parameters for
    vars N_HCO3i and N_HCO3i;
  enddef;
  def map between wi and wo for
    vars wi and wi;
  enddef;
  def map between N_HCO3o and N_Clo for
    vars N_HCO3o and N_HCO3o;
  enddef;
  def map between model_parameters and J_KCC1 for
    vars Ko and Ko;
    vars Clo and Clo;
    vars Cli and Cli;
    vars F and F;
    vars R and R;
    vars T and T;
    vars Ki and Ki;
  enddef;
  def map between N_Nai and model_parameters for
    vars N_Nai and N_Nai;
  enddef;
  def map between J_NBC and I_Na for
    vars J_NBC and J_NBC;
  enddef;
  def map between model_parameters and J_NaKATPase for
    vars Nai and Nai;
    vars Ko and Ko;
  enddef;
  def map between environment and model_parameters for
    vars time and time;
  enddef;
  def map between J_NaKATPase and N_Ki for
    vars J_NaKATPase and J_NaKATPase;
  enddef;
  def map between N_Nao and model_parameters for
    vars N_Nao and N_Nao;
  enddef;
  def map between model_parameters and N_Nao for
    vars gNa and gNa;
    vars theta_NBC and theta_NBC;
    vars theta_NKCC1 and theta_NKCC1;
    vars kc and kc;
    vars F and F;
    vars y and y;
  enddef;
  def map between membrane and N_Ki for
    vars Vm and Vm;
  enddef;
  def map between environment and N_Nao for
    vars time and time;
  enddef;
  def map between J_NBC and N_HCO3i for
    vars J_NBC and J_NBC;
  enddef;
  def map between model_parameters and N_Ko for
    vars theta_KCC1 and theta_KCC1;
    vars theta_NKCC1 and theta_NKCC1;
    vars kc and kc;
    vars F and F;
    vars gK and gK;
    vars y and y;
  enddef;
  def map between wi and model_parameters for
    vars wi and wi;
  enddef;
  def map between N_HCO3i and N_Cli for
    vars dN_HCO3i_dt and dN_HCO3i_dt;
  enddef;
  def map between environment and N_Cli for
    vars time and time;
  enddef;
  def map between membrane and I_Na for
    vars Vm and Vm;
  enddef;
  def map between model_parameters and wi for
    vars Nai and Nai;
    vars Ko and Ko;
    vars Clo and Clo;
    vars Xi and Xi;
    vars Cli and Cli;
    vars Lp and Lp;
    vars HCO3i and HCO3i;
    vars Nao and Nao;
    vars Ki and Ki;
    vars HCO3o and HCO3o;
  enddef;
  def map between Nernst_potentials and membrane for
    vars ENa and ENa;
    vars EK and EK;
    vars ECl and ECl;
  enddef;
  def map between model_parameters and N_Ki for
    vars theta_KCC1 and theta_KCC1;
    vars theta_NKCC1 and theta_NKCC1;
    vars F and F;
    vars gK and gK;
  enddef;
  def map between environment and N_HCO3o for
    vars time and time;
  enddef;
  def map between J_NaKATPase and membrane for
    vars J_NaKATPase and J_NaKATPase;
  enddef;
  def map between Nernst_potentials and N_Ko for
    vars EK and EK;
  enddef;
  def map between N_Clo and model_parameters for
    vars N_Clo and N_Clo;
  enddef;
  def map between ENBC and J_NBC for
    vars ENBC and ENBC;
  enddef;
  def map between model_parameters and membrane for
    vars gNa and gNa;
    vars theta_NBC and theta_NBC;
    vars F and F;
    vars gK and gK;
    vars gCl and gCl;
  enddef;
  def map between N_Ko and model_parameters for
    vars N_Ko and N_Ko;
  enddef;
  def map between N_Nai and N_Cli for
    vars dN_Nai_dt and dN_Nai_dt;
  enddef;
  def map between model_parameters and ENBC for
    vars Nai and Nai;
    vars F and F;
    vars R and R;
    vars HCO3i and HCO3i;
    vars Nao and Nao;
    vars T and T;
    vars HCO3o and HCO3o;
  enddef;
  def map between J_NaKATPase and N_Nai for
    vars J_NaKATPase and J_NaKATPase;
  enddef;
enddef;
// #wi
// title wi
// alternative: ratio of astrocyte volume to astrocyte area
