// creator: Family Lloyd; Given Catherine; Other May; c.lloyd@auckland.ac.nz; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2010-06-22
// reference: subject_type keyword; endocrine; bone; parathyroid hormone
// reference: Pubmed_id 19732857; Family Peterson; Given M; Other C; Family Riggs; Given M; Other M; title A physiologically based mathematical model of integrated calcium homeostasis and bone remodeling; W3CDTF 2010-01; title Bone; volume 46; first_page 49; last_page 63
def model peterson_2010 as
  // A physiologically based mathematical model of integrated calcium homeostasis and bone remodeling
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // Model Structure
  //
  // ABSTRACT: Bone biology is physiologically complex and intimately linked to calcium homeostasis. The literature provides a wealth of qualitative and/or quantitative descriptions of cellular mechanisms, bone dynamics, associated organ dynamics, related disease sequela, and results of therapeutic interventions. We present a physiologically based mathematical model of integrated calcium homeostasis and bone biology constructed from literature data. The model includes relevant cellular aspects with major controlling mechanisms for bone remodeling and calcium homeostasis and appropriately describes a broad range of clinical and therapeutic conditions. These include changes in plasma parathyroid hormone (PTH), calcitriol, calcium and phosphate (PO4), and bone-remodeling markers as manifested by hypoparathyroidism and hyperparathyroidism, renal insufficiency, daily PTH 1-34 administration, and receptor activator of NF-kappaB ligand (RANKL) inhibition. This model highlights the utility of systems approaches to physiologic modeling in the bone field. The presented bone and calcium homeostasis model provides an integrated mathematical construct to conduct hypothesis testing of influential system aspects, to visualize elements of this complex endocrine system, and to continue to build upon iteratively with the results of ongoing scientific research. Copyright (c) 2009 Elsevier Inc. All rights reserved.
  //
  // The original paper reference is cited below:
  //
  // A physiologically based mathematical model of integrated calcium homeostasis and bone remodeling, M.C. Peterson and M.M. Riggs, 2010, Bone, 46, 49-63. PubMed ID: 19732857 (http://www.ncbi.nlm.nih.gov/pubmed/19732857)
  //
  // A schematic representation of the physiologic system model describing calcium homeostasis and bone remodeling. Solid arrows represent fluxes and dashed arrows represent binding effects.
  def unit hour as
    unit second {mult: 3600.0};
  enddef;
  def unit first_order_rate_constant as
    unit hour {expo: -1};
  enddef;
  def unit millimole as
    unit mole {pref: milli};
  enddef;
  def unit millimole_per_hour as
    unit mole {pref: milli};
    unit hour {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit litre_per_hour as
    unit litre;
    unit hour {expo: -1};
  enddef;

  def comp environment as
    var time: hour {pub: out};
  enddef;
  // Gut

  // title: A1
  // alternative: calcium concentration in the gut
  def comp A1 as
    var A1: millimole {pub: out, init: 1.3};
    var v_1_4: dimensionless {pub: out};
    var delta_2_1: dimensionless {init: 0.75};
    var k_1_4: first_order_rate_constant {init: 0.0495};
    var D1: millimole {init: 1.0};
    var H_plus_2_1: dimensionless {pub: in};
    var H_1_4: dimensionless {pub: in};
    var A2: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A1, time) = D1*H_plus_2_1-v_1_4;
    v_1_4 = (H_1_4*(A2/0.5{dimensionless}/(A1+delta_2_1))+k_1_4)*A1;
  enddef;

  def comp H_plus_2_1 as
    var H_plus_2_1: dimensionless {pub: out};
    var alpha: dimensionless {init: };
    var rho: dimensionless {init: 0.25};
    var gamma: dimensionless {init: 4.0};
    var delta: dimensionless {init: 0.75};
    var A1: millimole {pub: in};
    H_plus_2_1 = rho+(alpha-rho)*(pow(A1, gamma)/(pow(delta, gamma)+pow(A1, gamma)));
  enddef;

  def comp H_1_4 as
    var H_1_4: dimensionless {pub: out};
    var alpha: dimensionless {init: 0.9};
    var gamma: dimensionless {init: 1.0};
    var delta: dimensionless {init: 1.0};
    var A1: millimole {pub: in};
    H_1_4 = alpha*(pow(A1, gamma)/(pow(delta, gamma)+pow(A1, gamma)));
  enddef;

  // title: A2
  // alternative: calcitriol-dependent calcium absorption in the gut
  def comp A2 as
    var A2: dimensionless {pub: out, init: 0.5};
    var H_plus_6_2: dimensionless {pub: in};
    var H_minus_6_2: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A2, time) = H_plus_6_2*(1.0{dimensionless}-A2)-H_minus_6_2*A2;
  enddef;

  def comp H_plus_6_2 as
    var H_plus_6_2: dimensionless {pub: out};
    var alpha: dimensionless {init: 0.037};
    var rho: dimensionless {init: 0.003};
    var gamma: dimensionless {init: 1.0};
    var delta: dimensionless {init: 90.0};
    var A2: dimensionless {pub: in};
    H_plus_6_2 = rho+(alpha-rho)*(pow(A2, gamma)/(pow(delta, gamma)+pow(A2, gamma)));
  enddef;

  def comp H_minus_6_2 as
    var H_minus_6_2: dimensionless {pub: out};
    var alpha: dimensionless {init: 0.037};
    var rho: dimensionless {init: 0.003};
    var gamma: dimensionless {init: 1.0};
    var delta: dimensionless {init: 90.0};
    var A2: dimensionless {pub: in};
    H_minus_6_2 = alpha-(alpha-rho)*(pow(A2, gamma)/(pow(delta, gamma)+pow(A2, gamma)));
  enddef;

  // title: A3
  // alternative: PO4 concentration in the gut
  def comp A3 as
    var A3: millimole {pub: out, init: 0.839};
    var k_3_5: first_order_rate_constant {pub: out, init: 0.365};
    var D3: millimole {init: 0.4};
    var F3: dimensionless {init: 0.7};
    var time: hour {pub: in};
    ode(A3, time) = D3*F3-k_3_5*A3;
  enddef;
  // Vasculature

  // title: A4
  // alternative: calcium concentration in the vasculature
  def comp A4 as
    var A4: millimole {pub: out, init: 32.9};
    var A4_0: millimole {pub: out, init: 32.9};
    var v_12_4: dimensionless {pub: out};
    var v_4_12: dimensionless {pub: out};
    var v_4_u: dimensionless;
    var phi_4_12: dimensionless {init: 0.1144};
    var phi_12_4: dimensionless {init: 0.1078};
    var gamma_24_12_4: dimensionless {init: 0.6038};
    var k_4_12: millimole_per_hour {init: 3.667};
    var GFR: litre_per_hour {pub: in};
    var v_1_4: dimensionless {pub: in};
    var H_18_12_4: dimensionless {pub: in};
    var H_6_4: dimensionless {pub: in};
    var H_4_u: dimensionless {pub: in};
    var H_7_4_u: dimensionless {pub: in};
    var A17: dimensionless {pub: in};
    var A18: dimensionless {pub: in};
    var A24: dimensionless {pub: in};
    var A17_0: dimensionless {pub: in};
    var A18_0: dimensionless {pub: in};
    var A24_0: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A4, time) = v_12_4+v_1_4-(v_4_12+v_4_u);
    v_12_4 = k_4_12*(1.0{dimensionless}-phi_12_4)+k_4_12*phi_12_4*H_18_12_4*pow(A24*A18_0/(A24_0*A18), gamma_24_12_4);
    v_4_12 = k_4_12*(A4/A4_0)*(1.0{dimensionless}-phi_4_12)+phi_4_12*(A17/A17_0);
    v_4_u = (2.0{dimensionless}-H_6_4)*(0.3{dimensionless}*GFR*A4-H_4_u*H_7_4_u);
  enddef;

  def comp H_18_12_4 as
    var H_18_12_4: dimensionless {pub: out};
    var alpha: dimensionless {init: };
    var gamma: dimensionless {init: 1.0};
    var delta: dimensionless {init: };
    var A4: millimole {pub: in};
    H_18_12_4 = alpha*(pow(A4, gamma)/(pow(delta, gamma)+pow(A4, gamma)));
  enddef;

  def comp H_6_4 as
    var H_6_4: dimensionless {pub: out};
    var alpha: dimensionless {init: 2};
    var gamma: dimensionless {init: 1};
    var delta: dimensionless {init: 90};
    var A4: millimole {pub: in};
    H_6_4 = alpha*(pow(A4, gamma)/(pow(delta, gamma)+pow(A4, gamma)));
  enddef;

  def comp H_4_u as
    var H_4_u: dimensionless {pub: out};
    var alpha: dimensionless {init: };
    var gamma: dimensionless {init: 1};
    var delta: dimensionless {init: 1.573};
    var A4: millimole {pub: in};
    H_4_u = alpha*(pow(A4, gamma)/(pow(delta, gamma)+pow(A4, gamma)));
  enddef;

  def comp H_7_4_u as
    var H_7_4_u: dimensionless {pub: out};
    var alpha: dimensionless {init: 1.0615};
    var gamma: dimensionless {init: 1};
    var delta: dimensionless {init: };
    var A4: millimole {pub: in};
    H_7_4_u = alpha*(pow(A4, gamma)/(pow(delta, gamma)+pow(A4, gamma)));
  enddef;

  // title: A5
  // alternative: PO4 concentration in the vasculature
  def comp A5 as
    var A5: millimole {pub: out, init: 16.8};
    var A5_0: millimole {pub: out, init: 16.8};
    var v_5_8: dimensionless {pub: out};
    var v_8_5: dimensionless {pub: out};
    var v_5_14: dimensionless {pub: out};
    var v_14_5: dimensionless {pub: out};
    var v_5_u: dimensionless;
    var v_3_5: dimensionless;
    var phi_5_u: dimensionless {init: 1.142};
    var k_5_8: first_order_rate_constant {init: 51.8};
    var k_8_5: first_order_rate_constant {init: 0.01927};
    var v_12_4: dimensionless {pub: in};
    var v_4_12: dimensionless {pub: in};
    var k_3_5: first_order_rate_constant {pub: in};
    var GFR: litre_per_hour {pub: in};
    var A3: millimole {pub: in};
    var A8: millimole {pub: in};
    var time: hour {pub: in};
    ode(A5, time) = v_5_14+v_3_5+v_8_5-(v_14_5+v_5_u+v_5_8);
    v_5_14 = 0.464{dimensionless}*v_4_12;
    v_14_5 = 0.464{dimensionless}*v_12_4;
    v_5_u = 0.88{dimensionless}*GFR*A5-0.88{dimensionless}*GFR*phi_5_u;
    v_3_5 = k_3_5*A3;
    v_5_8 = k_5_8*A5;
    v_8_5 = k_8_5*A8;
  enddef;

  // title: A6
  // alternative: calcitriol concentration in the vasculature
  def comp A6 as
    var A6: millimole {pub: out, init: 1260.0};
    var k_6D: first_order_rate_constant {init: 0.1};
    var A9: millimole_per_hour {pub: in};
    var time: hour {pub: in};
    ode(A6, time) = A9-k_6D*A6;
  enddef;

  // title: A7
  // alternative: PTH concentration in the vasculature
  def comp A7 as
    var A7: millimole {pub: out, init: 53.9};
    var k_7D: first_order_rate_constant {init: 7.143};
    var H_minus_4_10_7: dimensionless {pub: in};
    var A10: dimensionless {pub: in};
    var A11: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A7, time) = H_minus_4_10_7*(A10/0.5{dimensionless})*A11-k_7D*A7;
  enddef;

  def comp H_minus_4_10_7 as
    var H_minus_4_10_7: dimensionless {pub: out};
    var alpha: dimensionless {init: 96.25};
    var rho: dimensionless {init: 6249};
    var gamma: dimensionless {init: 11.74};
    var delta: dimensionless {init: };
    var A7: millimole {pub: in};
    H_minus_4_10_7 = alpha-(alpha-rho)*(pow(A7, gamma)/(pow(delta, gamma)+pow(A7, gamma)));
  enddef;
  // Intracellular phosphate

  // title: A8
  // alternative: intracellular PO4 concentration
  def comp A8 as
    var A8: millimole {pub: out, init: 3226.0};
    var v_5_8: dimensionless {pub: in};
    var v_8_5: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A8, time) = v_5_8-v_8_5;
  enddef;
  // Kidney

  // title: A9
  // alternative: 1-alpha-OH concentration in the kidney
  def comp A9 as
    var A9: millimole_per_hour {pub: out, init: 126};
    var k_9D: first_order_rate_constant {init: 0.05};
    var k_9S: first_order_rate_constant {init: 6.3};
    var H_minus_5_9: dimensionless {pub: in};
    var H_7_9: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A9, time) = k_9S*H_7_9*H_minus_5_9-k_9D*A9;
  enddef;

  def comp H_minus_5_9 as
    var H_minus_5_9: dimensionless {pub: out};
    var alpha: dimensionless {init: 1.525};
    var rho: dimensionless {init: };
    var gamma: dimensionless {init: 8.252};
    var delta: dimensionless {init: 1.302};
    var A9: millimole_per_hour {pub: in};
    var A5: millimole {pub: in};
    var A5_0: millimole {pub: in};
    H_minus_5_9 = sel
      case A5 < A5_0:
        1.0{dimensionless};
      otherwise:
        alpha-(alpha-rho)*(pow(A9, gamma)/(pow(delta, gamma)+pow(A9, gamma)));
    endsel;
  enddef;

  def comp H_7_9 as
    var H_7_9: dimensionless {pub: out};
    var alpha: dimensionless {init: };
    var gamma: dimensionless {init: 1.549};
    var delta: dimensionless {init: 0.1112};
    var A9: millimole_per_hour {pub: in};
    H_7_9 = alpha*(pow(A9, gamma)/(pow(delta, gamma)+pow(A9, gamma)));
  enddef;
  // Parathyroid gland

  // title: A10
  // alternative: PT pool in the PT gland
  def comp A10 as
    var A10: dimensionless {pub: out, init: 0.5};
    var alpha_10: dimensionless {init: 0.01};
    var T_minus_6_4: dimensionless;
    var T_plus_6_4: dimensionless;
    var b_T6_4: dimensionless {init: 0.03};
    var delta_T6_4: millimolar {init: 90.0};
    var gamma_4_10: dimensionless {init: };
    var V_vasc: litre {pub: in};
    var A4: millimole {pub: in};
    var A4_0: millimole {pub: in};
    var A6: millimole {pub: in};
    var time: hour {pub: in};
    ode(A10, time) = (1.0{dimensionless}-A10)*alpha_10*(0.85{dimensionless}*T_minus_6_4+0.15{dimensionless})-A10*alpha_10*(0.85{dimensionless}*T_plus_6_4+0.15{dimensionless});
    T_plus_6_4 = 1.0{dimensionless}+(exp(b_T6_4*(A6/(V_vasc-delta_T6_4*pow(A4_0/A4, gamma_4_10))))-exp(-b_T6_4*(A6/(V_vasc-delta_T6_4*pow(A4_0/A4, gamma_4_10)))))/(exp(b_T6_4*(A6/(V_vasc-delta_T6_4*pow(A4_0/A4, gamma_4_10))))+exp(-b_T6_4*(A6/(V_vasc-delta_T6_4*pow(A4_0/A4, gamma_4_10)))));
    T_minus_6_4 = 1.0{dimensionless}-(exp(b_T6_4*(A6/(V_vasc-delta_T6_4*pow(A4_0/A4, gamma_4_10))))-exp(-b_T6_4*(A6/(V_vasc-delta_T6_4*pow(A4_0/A4, gamma_4_10)))))/(exp(b_T6_4*(A6/(V_vasc-delta_T6_4*pow(A4_0/A4, gamma_4_10))))+exp(-b_T6_4*(A6/(V_vasc-delta_T6_4*pow(A4_0/A4, gamma_4_10)))));
  enddef;

  // title: A11
  // alternative: PT maximum capacity in the PT gland
  def comp A11 as
    var A11: dimensionless {pub: out, init: 1.0};
    var k_11: first_order_rate_constant {init: 0.0001604};
    var H_minus_6_11: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A11, time) = k_11*H_minus_6_11-k_11*A11;
  enddef;

  def comp H_minus_6_11 as
    var H_minus_6_11: dimensionless {pub: out};
    var alpha: dimensionless {init: 4.103};
    var rho: dimensionless {init: 0.9};
    var gamma: dimensionless {init: 12.50};
    var delta: dimensionless {init: };
    var A11: dimensionless {pub: in};
    H_minus_6_11 = alpha-(alpha-rho)*(pow(A11, gamma)/(pow(delta, gamma)+pow(A11, gamma)));
  enddef;
  // Bone

  // title: A12
  // alternative: immediately exchangable calcium concentration in the bone
  def comp A12 as
    var A12: millimole {pub: out, init: 100.0};
    var v_4_12: dimensionless {pub: in};
    var v_12_4: dimensionless {pub: in};
    var k_13_12: first_order_rate_constant {pub: in};
    var k_12_13: first_order_rate_constant {pub: in};
    var A13: millimole {pub: in};
    var time: hour {pub: in};
    ode(A12, time) = v_4_12+k_13_12*A13-(v_12_4+k_12_13*A12);
  enddef;

  // title: A13
  // alternative: non-immediately exchangeable calcium concentration in the bone
  def comp A13 as
    var A13: millimole {pub: out, init: 24900.0};
    var k_13_12: first_order_rate_constant {pub: in};
    var k_12_13: first_order_rate_constant {pub: in};
    var A12: millimole {pub: in};
    var time: hour {pub: in};
    ode(A13, time) = k_12_13*A12-k_13_12*A13;
  enddef;

  // title: A14
  // alternative: immediately exchangable PO4 concentration in the bone
  def comp A14 as
    var A14: millimole {pub: out, init: 1.3};
    var v_5_14: dimensionless {pub: in};
    var v_14_5: dimensionless {pub: in};
    var k_15_14: first_order_rate_constant {pub: in};
    var k_14_15: first_order_rate_constant {pub: in};
    var A15: millimole {pub: in};
    var time: hour {pub: in};
    ode(A14, time) = v_5_14+k_15_14*A15-(v_14_5+k_14_15*A14);
  enddef;

  // title: A15
  // alternative: non-immediately exchangable PO4 concentration in the bone
  def comp A15 as
    var A15: millimole {pub: out, init: 1.3};
    var k_14_15: first_order_rate_constant {pub: in};
    var k_15_14: first_order_rate_constant {pub: in};
    var A14: millimole {pub: in};
    var time: hour {pub: in};
    ode(A15, time) = k_14_15*A14-k_15_14*A15;
  enddef;

  // title: A16
  // alternative: responding osteoblast population in the bone
  def comp A16 as
    var A16: dimensionless {pub: out, init: 0.00104122};
    var k_17D: first_order_rate_constant {pub: out, init: 0.0006055};
    var A16_0: dimensionless {pub: out, init: 0.00104122};
    var H_plus_20_16: dimensionless {pub: in};
    var H_plus_20_17: dimensionless {pub: in};
    var A17_0: dimensionless {pub: in};
    var pi_c_0: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A16, time) = k_17D*(A17_0/pi_c_0)*H_plus_20_16-k_17D*A17_0*(pi_c_0/(A16_0*H_plus_20_17*A16));
  enddef;

  def comp H_plus_20_16 as
    var H_plus_20_16: dimensionless {pub: out};
    var alpha: dimensionless {init: 4.176};
    var rho: dimensionless {init: 0.2016};
    var gamma: dimensionless {init: 1.810};
    var delta: dimensionless {init: };
    var A16: dimensionless {pub: in};
    H_plus_20_16 = rho+(alpha-rho)*(pow(A16, gamma)/(pow(delta, gamma)+pow(A16, gamma)));
  enddef;

  def comp H_plus_20_17 as
    var H_plus_20_17: dimensionless {pub: out};
    var alpha: dimensionless {init: 0.2517};
    var rho: dimensionless {init: 5.585e-5};
    var gamma: dimensionless {init: 0.1223};
    var delta: dimensionless {init: };
    var A16: dimensionless {pub: in};
    H_plus_20_17 = rho+(alpha-rho)*(pow(A16, gamma)/(pow(delta, gamma)+pow(A16, gamma)));
  enddef;

  // title: A17
  // alternative: Osteoblast population in the bone
  def comp A17 as
    var A17: dimensionless {pub: out};
    var A17_0: dimensionless {pub: out, init: 0.00501324};
    var A17a: dimensionless {init: };
    var A17b: dimensionless {init: };
    var k_17aD: first_order_rate_constant;
    var k_17D_: first_order_rate_constant;
    var A17a_0: dimensionless {init: };
    var phi_17a: dimensionless {init: 0.7976};
    var phi_k17D: dimensionless {init: 0.3132};
    var phi_28_k17D: dimensionless {init: 1.01};
    var k_17D: first_order_rate_constant {pub: in};
    var H_minus_20_17D: dimensionless {pub: in};
    var H_28_17D: dimensionless {pub: in};
    var H_plus_20_17: dimensionless {pub: in};
    var A16: dimensionless {pub: in};
    var A16_0: dimensionless {pub: in};
    var pi_c_0: dimensionless {pub: in};
    var time: hour {pub: in};
    A17 = A17a+A17b;
    ode(A17a, time) = k_17D*A17_0*pi_c_0/(A16_0*H_plus_20_17*A16*phi_17a*(k_17aD/k_17D_))-k_17aD*A17a;
    k_17aD = (k_17D*A17_0+k_17D_*phi_k17D*A17a_0*phi_17a-k_17D_*phi_k17D*A17_0)/A17a_0;
    k_17D_ = phi_28_k17D*A17_0*H_minus_20_17D/pi_c_0-H_28_17D;
    ode(A17b, time) = k_17D*A17_0*pi_c_0/(A16_0*H_plus_20_17*A16*(1.0{dimensionless}-phi_17a)*phi_k17D)-k_17D_*phi_k17D*A17b;
  enddef;

  def comp H_minus_20_17D as
    var H_minus_20_17D: dimensionless {pub: out};
    var alpha: dimensionless {init: 0.7114};
    var rho: dimensionless {init: 0.1743};
    var gamma: dimensionless {init: 2.924};
    var delta: dimensionless {init: };
    var A17: dimensionless {pub: in};
    H_minus_20_17D = alpha-(alpha-rho)*(pow(A17, gamma)/(pow(delta, gamma)+pow(A17, gamma)));
  enddef;

  def comp H_28_17D as
    var H_28_17D: dimensionless {pub: out};
    var alpha: dimensionless {init: 0.001802};
    var gamma: dimensionless {init: 1.0};
    var delta: dimensionless {init: 3.816};
    var A17: dimensionless {pub: in};
    H_28_17D = alpha*(pow(A17, gamma)/(pow(delta, gamma)+pow(A17, gamma)));
  enddef;

  // title: A18
  // alternative: osteoclast population in the bone
  def comp A18 as
    var A18: dimensionless {pub: out, init: 0.001154};
    var A18_0: dimensionless {pub: out, init: 0.001154};
    var k_18D: first_order_rate_constant {init: 0.02917};
    var H_minus_22_18D: dimensionless {pub: in};
    var H_plus_20_18D: dimensionless {pub: in};
    var H_plus_24_18S: dimensionless {pub: in};
    var pi_c_0: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A18, time) = k_18D*pi_c_0*A18_0*H_plus_24_18S-k_18D*H_plus_20_18D*H_minus_22_18D*A18;
  enddef;

  def comp H_minus_22_18D as
    var H_minus_22_18D: dimensionless {pub: out};
    var alpha: dimensionless {init: 3.803};
    var rho: dimensionless {init: 0.4698};
    var gamma: dimensionless {init: 3.092};
    var delta: dimensionless {init: };
    var A18: dimensionless {pub: in};
    H_minus_22_18D = alpha-(alpha-rho)*(pow(A18, gamma)/(pow(delta, gamma)+pow(A18, gamma)));
  enddef;

  def comp H_plus_24_18S as
    var H_plus_24_18S: dimensionless {pub: out};
    var alpha: dimensionless {init: 3.545};
    var rho: dimensionless {init: 0.3883};
    var gamma: dimensionless {init: 8.531};
    var delta: dimensionless {init: };
    var A18: dimensionless {pub: in};
    H_plus_24_18S = rho+(alpha-rho)*(pow(A18, gamma)/(pow(delta, gamma)+pow(A18, gamma)));
  enddef;

  def comp H_plus_20_18D as
    var H_plus_20_18D: dimensionless {pub: out};
    var alpha: dimensionless {init: 2.175};
    var rho: dimensionless {init: 0.2004};
    var gamma: dimensionless {init: 1.017};
    var delta: dimensionless {init: };
    var A18: dimensionless {pub: in};
    H_plus_20_18D = rho+(alpha-rho)*(pow(A18, gamma)/(pow(delta, gamma)+pow(A18, gamma)));
  enddef;

  // title: A19
  // alternative: latent TGF-beta concetration in the bone
  def comp A19 as
    var A19: dimensionless {pub: out, init: 228.1};
    var k_19_20: first_order_rate_constant {pub: out, init: 2.98e-5};
    var gamma_19_20: dimensionless {pub: out, init: 0.9191};
    var gamma_17_19S: dimensionless {pub: out, init: 0.01113};
    var gamma_18_19_20: dimensionless {pub: out, init: 0.5939};
    var A19_0: dimensionless {pub: out, init: 228.1};
    var A17: dimensionless {pub: in};
    var A17_0: dimensionless {pub: in};
    var A18: dimensionless {pub: in};
    var A18_0: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A19, time) = k_19_20*A19_0*pow(A17/A17_0, gamma_17_19S)-k_19_20*pow(A19/A19_0, gamma_19_20)*pow(A18/A18_0, gamma_18_19_20)*A19;
  enddef;

  // title: A20
  // alternative: active TGF-beta concentration in the bone
  def comp A20 as
    var A20: dimensionless {pub: out, init: 0.2281};
    var A20_0: dimensionless {pub: out, init: 0.2281};
    var gamma_18_19_20: dimensionless {pub: in};
    var k_19_20: first_order_rate_constant {pub: in};
    var gamma_19_20: dimensionless {pub: in};
    var A19: dimensionless {pub: in};
    var A19_0: dimensionless {pub: in};
    var A18: dimensionless {pub: in};
    var A18_0: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A20, time) = k_19_20*pow(A19/A19_0, gamma_19_20)*pow(A18/A18_0, gamma_18_19_20)*A19-1000.0{dimensionless}*k_19_20*A20;
  enddef;

  // title: A21
  // alternative: RANK concentration in the bone
  def comp A21 as
    var A21: dimensionless {pub: out, init: 10.0};
    var k_21_24: first_order_rate_constant {pub: out, init: 0.00000624};
    var k_24_21: first_order_rate_constant {pub: out, init: 0.1120};
    var A21_0: dimensionless {init: 10.0};
    var k_21D: first_order_rate_constant {init: 0.003237};
    var gamma_20_21: dimensionless {init: 0.1518};
    var A20: dimensionless {pub: in};
    var A20_0: dimensionless {pub: in};
    var A22: dimensionless {pub: in};
    var A22_0: dimensionless {pub: in};
    var A24: dimensionless {pub: in};
    var A24_0: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A21, time) = (k_21D*A21_0+k_21_24*A21_0*A22_0-k_24_21*pow(A24_0/A20_0, gamma_20_21))*pow(A20, gamma_20_21)+k_24_21*A24-(k_21D*A21+k_21_24*A21*A22);
  enddef;

  // title: A22
  // alternative: RANKL concetration in the bone
  def comp A22 as
    var A22: dimensionless {pub: out, init: 0.4};
    var A22_0: dimensionless {pub: out, init: 0.4};
    var k_22S: first_order_rate_constant;
    var k_22D: first_order_rate_constant {init: 0.002933};
    var gamma_17_22: dimensionless {init: };
    var alpha_17_22: dimensionless {init: 0.1738};
    var delta_17_22: dimensionless {init: };
    var V_vasc: litre {pub: in};
    var k_21_24: first_order_rate_constant {pub: in};
    var k_24_21: first_order_rate_constant {pub: in};
    var A7: millimole {pub: in};
    var A17: dimensionless {pub: in};
    var A17_0: dimensionless {pub: in};
    var A21: dimensionless {pub: in};
    var A23: dimensionless {pub: in};
    var A24: dimensionless {pub: in};
    var A25: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A22, time) = k_22S+k_24_21*(A24+A25)-(k_22D*A22+k_21_24*(A23*A22+A21*A22));
    k_22S = k_22D*A22_0*pow(A17/A17_0, gamma_17_22)*alpha_17_22*(A7/V_vasc)/(delta_17_22*pow(A17/A17_0, gamma_17_22)+A7/V_vasc);
  enddef;

  // title: A23
  // alternative: OPG concentration in the bone
  def comp A23 as
    var A23: dimensionless {pub: out, init: 4.0};
    var A23_0: dimensionless {pub: out, init: 4.0};
    var k_23D: first_order_rate_constant {init: 15.89};
    var delta_7_23: millimolar {init: 3.85};
    var V_vasc: litre {pub: in};
    var k_21_24: first_order_rate_constant {pub: in};
    var k_24_21: first_order_rate_constant {pub: in};
    var A7: millimole {pub: in};
    var A16: dimensionless {pub: in};
    var A16_0: dimensionless {pub: in};
    var A22: dimensionless {pub: in};
    var A25: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A23, time) = k_23D*A23_0*(A16/A16_0)*(A7/V_vasc+delta_7_23*(A16/A16_0)/(2.0{dimensionless}*(A7/V_vasc)))+k_24_21*A25-(k_21_24*A23*A22+k_23D*A23);
  enddef;

  // title: A24
  // alternative: RANK-RANKL receptor-ligand complex
  def comp A24 as
    var A24: dimensionless {pub: out, init: };
    var A24_0: dimensionless {pub: out, init: };
    var k_21_24: first_order_rate_constant {pub: in};
    var k_24_21: first_order_rate_constant {pub: in};
    var A21: dimensionless {pub: in};
    var A22: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A24, time) = k_21_24*A21*A22-k_24_21*A24;
  enddef;

  // title: A25
  // alternative: OPG-RANKL receptor-ligand complex
  def comp A25 as
    var A25: dimensionless {pub: out, init: };
    var A25_0: dimensionless {pub: out, init: };
    var k_21_24: first_order_rate_constant {pub: in};
    var k_24_21: first_order_rate_constant {pub: in};
    var A23: dimensionless {pub: in};
    var A22: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A25, time) = k_21_24*A23*A22-k_24_21*A25;
  enddef;
  // Osteoblast intracellular components

  // title: A26
  // alternative: intracellular Runx2 concentration in the osteoblast
  def comp A26 as
    var A26: dimensionless {pub: out, init: 10.0};
    var k_26S: first_order_rate_constant {init: 6.93};
    var H_plus_7_26D: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A26, time) = k_26S-H_plus_7_26D*A26;
  enddef;

  def comp H_plus_7_26D as
    var H_plus_7_26D: dimensionless {pub: out};
    var alpha: dimensionless {init: 5.125};
    var rho: dimensionless {init: 0.125};
    var gamma: dimensionless {init: 1.0};
    var delta: dimensionless {init: };
    var A26: dimensionless {pub: in};
    H_plus_7_26D = rho+(alpha-rho)*(pow(A26, gamma)/(pow(delta, gamma)+pow(A26, gamma)));
  enddef;

  // title: A27
  // alternative: intracellular CREB concetration in the osteoblast
  def comp A27 as
    var A27: dimensionless {pub: out, init: 10.0};
    var k_27S: first_order_rate_constant {init: };
    var k_27D: first_order_rate_constant {init: 0.002795};
    var H_plus_7_27S: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A27, time) = k_27S*H_plus_7_27S-k_27D*A27;
  enddef;

  def comp H_plus_7_27S as
    var H_plus_7_27S: dimensionless {pub: out};
    var alpha: dimensionless {init: 3.897};
    var rho: dimensionless {init: 0.5};
    var gamma: dimensionless {init: 1.0};
    var delta: dimensionless {init: };
    var A27: dimensionless {pub: in};
    H_plus_7_27S = rho+(alpha-rho)*(pow(A27, gamma)/(pow(delta, gamma)+pow(A27, gamma)));
  enddef;

  // title: A28
  // alternative: intracellular Bcl-2 concentration in the osteoblast
  def comp A28 as
    var A28: dimensionless {pub: out, init: 100.0};
    var k_28D: first_order_rate_constant {init: 0.693};
    var A26: dimensionless {pub: in};
    var A27: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(A28, time) = k_28D*A26*A27-k_28D*A28;
  enddef;

  def comp model_parameters as
    var GFR: litre_per_hour {pub: out, init: 6.0};
    var V_vasc: litre {pub: out, init: 14.0};
    var pi_c_0: dimensionless {pub: out, init: 0.2281};
    var k_13_12: first_order_rate_constant {pub: out, init: };
    var k_12_13: first_order_rate_constant {pub: out, init: };
    var k_15_14: first_order_rate_constant {pub: out, init: 2.444e-5};
    var k_14_15: first_order_rate_constant {pub: out, init: };
    var V_ic: litre {init: 32.3};
    var V_bone: litre {init: 46.4};
  enddef;
  def map between A1 and environment for
    vars time and time;
  enddef;
  def map between A2 and environment for
    vars time and time;
  enddef;
  def map between A3 and environment for
    vars time and time;
  enddef;
  def map between A4 and environment for
    vars time and time;
  enddef;
  def map between A5 and environment for
    vars time and time;
  enddef;
  def map between A6 and environment for
    vars time and time;
  enddef;
  def map between A7 and environment for
    vars time and time;
  enddef;
  def map between A8 and environment for
    vars time and time;
  enddef;
  def map between A9 and environment for
    vars time and time;
  enddef;
  def map between A10 and environment for
    vars time and time;
  enddef;
  def map between A11 and environment for
    vars time and time;
  enddef;
  def map between A12 and environment for
    vars time and time;
  enddef;
  def map between A13 and environment for
    vars time and time;
  enddef;
  def map between A14 and environment for
    vars time and time;
  enddef;
  def map between A15 and environment for
    vars time and time;
  enddef;
  def map between A16 and environment for
    vars time and time;
  enddef;
  def map between A17 and environment for
    vars time and time;
  enddef;
  def map between A18 and environment for
    vars time and time;
  enddef;
  def map between A19 and environment for
    vars time and time;
  enddef;
  def map between A20 and environment for
    vars time and time;
  enddef;
  def map between A21 and environment for
    vars time and time;
  enddef;
  def map between A22 and environment for
    vars time and time;
  enddef;
  def map between A23 and environment for
    vars time and time;
  enddef;
  def map between A24 and environment for
    vars time and time;
  enddef;
  def map between A25 and environment for
    vars time and time;
  enddef;
  def map between A26 and environment for
    vars time and time;
  enddef;
  def map between A27 and environment for
    vars time and time;
  enddef;
  def map between A28 and environment for
    vars time and time;
  enddef;
  def map between A2 and A1 for
    vars A2 and A2;
  enddef;
  def map between H_plus_2_1 and A1 for
    vars A1 and A1;
    vars H_plus_2_1 and H_plus_2_1;
  enddef;
  def map between H_1_4 and A1 for
    vars A1 and A1;
    vars H_1_4 and H_1_4;
  enddef;
  def map between H_plus_6_2 and A2 for
    vars A2 and A2;
    vars H_plus_6_2 and H_plus_6_2;
  enddef;
  def map between H_minus_6_2 and A2 for
    vars A2 and A2;
    vars H_minus_6_2 and H_minus_6_2;
  enddef;
  def map between H_18_12_4 and A4 for
    vars A4 and A4;
    vars H_18_12_4 and H_18_12_4;
  enddef;
  def map between H_6_4 and A4 for
    vars A4 and A4;
    vars H_6_4 and H_6_4;
  enddef;
  def map between H_4_u and A4 for
    vars A4 and A4;
    vars H_4_u and H_4_u;
  enddef;
  def map between H_7_4_u and A4 for
    vars A4 and A4;
    vars H_7_4_u and H_7_4_u;
  enddef;
  def map between A1 and A4 for
    vars v_1_4 and v_1_4;
  enddef;
  def map between A17 and A4 for
    vars A17 and A17;
    vars A17_0 and A17_0;
  enddef;
  def map between A18 and A4 for
    vars A18 and A18;
    vars A18_0 and A18_0;
  enddef;
  def map between A24 and A4 for
    vars A24 and A24;
    vars A24_0 and A24_0;
  enddef;
  def map between model_parameters and A4 for
    vars GFR and GFR;
  enddef;
  def map between A3 and A5 for
    vars A3 and A3;
    vars k_3_5 and k_3_5;
  enddef;
  def map between A4 and A5 for
    vars v_4_12 and v_4_12;
    vars v_12_4 and v_12_4;
  enddef;
  def map between A8 and A5 for
    vars A8 and A8;
    vars v_5_8 and v_5_8;
    vars v_8_5 and v_8_5;
  enddef;
  def map between model_parameters and A5 for
    vars GFR and GFR;
  enddef;
  def map between A9 and A6 for
    vars A9 and A9;
  enddef;
  def map between H_minus_4_10_7 and A7 for
    vars A7 and A7;
    vars H_minus_4_10_7 and H_minus_4_10_7;
  enddef;
  def map between A10 and A7 for
    vars A10 and A10;
  enddef;
  def map between A11 and A7 for
    vars A11 and A11;
  enddef;
  def map between H_minus_5_9 and A9 for
    vars A9 and A9;
    vars H_minus_5_9 and H_minus_5_9;
  enddef;
  def map between H_7_9 and A9 for
    vars A9 and A9;
    vars H_7_9 and H_7_9;
  enddef;
  def map between A5 and H_minus_5_9 for
    vars A5 and A5;
    vars A5_0 and A5_0;
  enddef;
  def map between A4 and A10 for
    vars A4 and A4;
    vars A4_0 and A4_0;
  enddef;
  def map between A6 and A10 for
    vars A6 and A6;
  enddef;
  def map between model_parameters and A10 for
    vars V_vasc and V_vasc;
  enddef;
  def map between H_minus_6_11 and A11 for
    vars A11 and A11;
    vars H_minus_6_11 and H_minus_6_11;
  enddef;
  def map between A4 and A12 for
    vars v_4_12 and v_4_12;
    vars v_12_4 and v_12_4;
  enddef;
  def map between A13 and A12 for
    vars A12 and A12;
    vars A13 and A13;
  enddef;
  def map between model_parameters and A12 for
    vars k_13_12 and k_13_12;
    vars k_12_13 and k_12_13;
  enddef;
  def map between model_parameters and A13 for
    vars k_13_12 and k_13_12;
    vars k_12_13 and k_12_13;
  enddef;
  def map between A5 and A14 for
    vars v_5_14 and v_5_14;
    vars v_14_5 and v_14_5;
  enddef;
  def map between model_parameters and A14 for
    vars k_15_14 and k_15_14;
    vars k_14_15 and k_14_15;
  enddef;
  def map between A15 and A14 for
    vars A14 and A14;
    vars A15 and A15;
  enddef;
  def map between model_parameters and A15 for
    vars k_15_14 and k_15_14;
    vars k_14_15 and k_14_15;
  enddef;
  def map between H_plus_20_16 and A16 for
    vars A16 and A16;
    vars H_plus_20_16 and H_plus_20_16;
  enddef;
  def map between H_plus_20_17 and A16 for
    vars A16 and A16;
    vars H_plus_20_17 and H_plus_20_17;
  enddef;
  def map between A17 and A16 for
    vars A16 and A16;
    vars A16_0 and A16_0;
    vars A17_0 and A17_0;
    vars k_17D and k_17D;
  enddef;
  def map between model_parameters and A16 for
    vars pi_c_0 and pi_c_0;
  enddef;
  def map between H_plus_20_17 and A17 for
    vars H_plus_20_17 and H_plus_20_17;
  enddef;
  def map between H_minus_20_17D and A17 for
    vars A17 and A17;
    vars H_minus_20_17D and H_minus_20_17D;
  enddef;
  def map between H_28_17D and A17 for
    vars A17 and A17;
    vars H_28_17D and H_28_17D;
  enddef;
  def map between model_parameters and A17 for
    vars pi_c_0 and pi_c_0;
  enddef;
  def map between H_minus_22_18D and A18 for
    vars A18 and A18;
    vars H_minus_22_18D and H_minus_22_18D;
  enddef;
  def map between H_plus_20_18D and A18 for
    vars A18 and A18;
    vars H_plus_20_18D and H_plus_20_18D;
  enddef;
  def map between H_plus_24_18S and A18 for
    vars A18 and A18;
    vars H_plus_24_18S and H_plus_24_18S;
  enddef;
  def map between model_parameters and A18 for
    vars pi_c_0 and pi_c_0;
  enddef;
  def map between A17 and A19 for
    vars A17 and A17;
    vars A17_0 and A17_0;
  enddef;
  def map between A18 and A19 for
    vars A18 and A18;
    vars A18_0 and A18_0;
  enddef;
  def map between A18 and A20 for
    vars A18 and A18;
    vars A18_0 and A18_0;
  enddef;
  def map between A19 and A20 for
    vars gamma_18_19_20 and gamma_18_19_20;
    vars gamma_19_20 and gamma_19_20;
    vars k_19_20 and k_19_20;
    vars A19 and A19;
    vars A19_0 and A19_0;
  enddef;
  def map between A20 and A21 for
    vars A20 and A20;
    vars A20_0 and A20_0;
  enddef;
  def map between A22 and A21 for
    vars A22 and A22;
    vars A22_0 and A22_0;
    vars k_21_24 and k_21_24;
    vars k_24_21 and k_24_21;
    vars A21 and A21;
  enddef;
  def map between A24 and A21 for
    vars A24 and A24;
    vars A24_0 and A24_0;
    vars k_21_24 and k_21_24;
    vars k_24_21 and k_24_21;
    vars A21 and A21;
  enddef;
  def map between A23 and A22 for
    vars A22 and A22;
    vars A23 and A23;
  enddef;
  def map between A24 and A22 for
    vars A22 and A22;
    vars A24 and A24;
  enddef;
  def map between A25 and A22 for
    vars A22 and A22;
    vars A25 and A25;
  enddef;
  def map between A17 and A22 for
    vars A17 and A17;
    vars A17_0 and A17_0;
  enddef;
  def map between A7 and A22 for
    vars A7 and A7;
  enddef;
  def map between model_parameters and A22 for
    vars V_vasc and V_vasc;
  enddef;
  def map between A21 and A23 for
    vars k_21_24 and k_21_24;
    vars k_24_21 and k_24_21;
  enddef;
  def map between A25 and A23 for
    vars A23 and A23;
    vars A25 and A25;
  enddef;
  def map between A16 and A23 for
    vars A16 and A16;
    vars A16_0 and A16_0;
  enddef;
  def map between A7 and A23 for
    vars A7 and A7;
  enddef;
  def map between model_parameters and A23 for
    vars V_vasc and V_vasc;
  enddef;
  def map between A21 and A25 for
    vars k_21_24 and k_21_24;
    vars k_24_21 and k_24_21;
  enddef;
  def map between H_plus_7_26D and A26 for
    vars A26 and A26;
    vars H_plus_7_26D and H_plus_7_26D;
  enddef;
  def map between H_plus_7_27S and A27 for
    vars A27 and A27;
    vars H_plus_7_27S and H_plus_7_27S;
  enddef;
  def map between A26 and A28 for
    vars A26 and A26;
  enddef;
  def map between A27 and A28 for
    vars A27 and A27;
  enddef;
enddef;
