def model PulmonaryAcinusFTUBasedOnAthanasiadesModel as
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit per_min as
    unit minute {expo: -1};
  enddef;
  def unit Pa as
    unit pascal;
  enddef;
  def unit L as
    unit litre;
  enddef;
  def unit L_per_second as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit L_per_Pa as
    unit L;
    unit Pa {expo: -1};
  enddef;
  def unit per_L as
    unit L {expo: -1};
  enddef;
  def unit Pa_sec_per_L as
    unit Pa;
    unit second;
    unit liter {expo: -1};
  enddef;
  def unit Pa_sec2_per_L2 as
    unit Pa;
    unit second;
    unit liter {expo: -2};
  enddef;
  def unit J_per_mole_per_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit grams_per_mole as
    unit gram;
    unit mole {expo: -1};
  enddef;
  def unit L_per_mole as
    unit litre;
    unit mole {expo: -1};
  enddef;
  def unit mole_per_second_Pa as
    unit mole;
    unit second {expo: -1};
    unit pascal {expo: -1};
  enddef;
  def unit Joule_per_mole_per_kelvin as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit mole_per_L as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mole_per_L_Pa as
    unit mole;
    unit litre {expo: -1};
    unit pascal {expo: -1};
  enddef;
  def unit L_per_second_mole as
    unit litre;
    unit second {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit Pa_second_per_meter3 as
    unit Pa;
    unit second;
    unit metre {expo: -3};
  enddef;

  def comp Environment as
    var time: second {pub: out};
    var numAlveoli: dimensionless {init: 24064, pub: out};
  enddef;

  def comp gasExchange as
    var time: second {pub: in};
    var numAlveoli: dimensionless {pub: in};
    var breathsPerMin: per_min {pub: in};
    var P_A: Pa {pub: in};
    var V_A: litre {pub: in};
    var D_o_: mole_per_second_Pa {init: 1.17e-07, pub: out};
    var f_o: dimensionless {init: 0.21000, pub: out};
    var f_oi: dimensionless;
    var D_c: mole_per_second_Pa {init: 2.37e-07, pub: out};
    var f_c: dimensionless {init: 2.7732e-06};
    var f_ci: dimensionless;
    var P_w: Pa {init: 6266.15, pub: out};
    var P_m: Pa {init: 101325};
    var p_ao: Pa;
    var p_o: Pa {pub: in};
    var p_ac: Pa {pub: out};
    var f_om: dimensionless {init: 0.21};
    var f_cm: dimensionless {init: 0};
    var Q_A: L_per_second {pub: out};
    var p_c: Pa {pub: in};
    var V_D: litre {init: 0.185};
    var V_T: litre {init: 0.41};
    var AlveolarResistance: Pa_second_per_meter3 {init: 0.65};
    var D_o: mole_per_second_Pa;
    D_o = D_o_*15{dimensionless}/breathsPerMin;
    // Diffusion capacity physiologically decreases at high frequencies (shorter alveolar contact time),
    // var q: L_per_second {pub: in};
    var q: L_per_second;
    q = (P_m-P_A)/numAlveoli/AlveolarResistance;
    p_ao = f_o*(P_A-P_w);
    p_ac = f_c*(P_A-P_w);
    Q_A = q+1{L_per_mole}*D_c*(p_c-p_ac)+1{L_per_mole}*D_o*(p_o-p_ao);
    f_oi = sel
      case V_T >= V_D:
        (f_o*V_D+f_om*(V_T-V_D))/V_T;
      otherwise:
        f_o;
    endsel;
    f_ci = sel
      case V_T >= V_D:
        (f_c*V_D+f_cm*(V_T-V_D))/V_T;
      otherwise:
        f_c;
    endsel;
    ode(f_o, time) = 1{dimensionless}/(V_A*numAlveoli)*(1{L_per_mole}*D_o*(p_o-p_ao)+(f_oi-f_o)*q-f_o*(1{L_per_mole}*D_c*(p_c-p_ac)+1{L_per_mole}*D_o*(p_o-p_ao)));
    ode(f_c, time) = 1{dimensionless}/(V_A*numAlveoli)*(1{L_per_mole}*D_c*(p_c-p_ac)+(f_ci-f_c)*q-f_c*(1{L_per_mole}*D_o*(p_o-p_ao)+1{L_per_mole}*D_c*(p_c-p_ac)));
  enddef;

  def comp gasTransport as
    var time: second {pub: in};
    var f_o: dimensionless {pub: in};
    var df_satdp: dimensionless;
    var L: dimensionless {init: 171200000};
    var K_T: L_per_mole {init: 10000};
    var K_R: L_per_mole {init: 3600000};
    var p_o: Pa {init: 5332.9, pub: out};
    var mmHg2Pa: dimensionless {init: 133.332};
    var sigma: mole_per_L_Pa {init: 1.05e-08};
    var D_o: mole_per_second_Pa {pub: in};
    var V_c: litre {init: 0.071};
    var P_A: Pa {pub: in};
    var P_w: Pa {pub: in};
    var T_h: mole_per_L {init: 0.002};
    var D_c: mole_per_second_Pa {pub: in};
    var delta: dimensionless;
    var h: mole_per_L;
    var l_2: L_per_second_mole {init: 164000};
    var p_c: Pa {init: 6132.83, pub: out};
    var p_ac: Pa {pub: in};
    var r_2: per_second {init: 0.12};
    var sigma_c: mole_per_L_Pa {init: 2.475e-07};
    var z: dimensionless {init: 0.00000044219};
    var R: Joule_per_mole_per_kelvin {init: 8.3145};
    var T: kelvin {init: 312.0};
    // Calculate oxygen saturation
    var Q: L_per_second {init: 2.78e-3};
    // Blood flow rate per second per acinus cardiac output 5L per min/30000 acini
    var C_O2: L {init: 0.0, pub: out};
    // Total transported Oxygen
    var Hb: mole_per_L {init: 15.0};
    // hemoglobin concentration (usually ~15 g/dL in healthy adults)
    // Haemoglobin saturation function (4-ligand binding model with T and R states)
    var K_R: L_per_mole {init: 3.6e6};
    // Relaxed state affinity
    var K_T: L_per_mole {init: 1.0e4};
    // Tense state affinity
    var L: dimensionless {init: 1.712e8};
    // Allosteric equilibrium constant
    var sigma: mol_per_L_per_Pa {init: 1.05e-8};
    // O2 solubility in plasma
    var satpo: dimensionless;
    var satt1: dimensionless;
    var satt2: dimensionless;
    var saturation: dimensionless {pub: out};
    satt1 = pow(1.0{dimensionless}+K_R*sigma*p_o, 4{dimensionless});
    satt2 = pow(1.0{dimensionless}+K_T*sigma*p_o, 4{dimensionless});
    satpo = satt1/(L*satt2+satt1);
    saturation = 2.25e-5{dimensionless}*p_o+Hb*1.34{dimensionless}*satpo;
    // dissolved + bound
    delta = pow(10{dimensionless}, 1.9{dimensionless});
    h = 1{mole_per_L}*pow(10{dimensionless}, -7.4{dimensionless});
    // df_satdp = ((L*pow(1{dimensionless}+K_T*sigma*p_o, 4{dimensionless})+pow(1{dimensionless}+K_R*sigma*p_o, 4{dimensionless}))*(3{dimensionless}*L*sqr(K_T)*sqr(sigma)*p_o*133.332{mmHg}*sqr(1{dimensionless}+K_T*sigma*p_o)+L*K_T*sigma*133.332{mmHg}*pow(1{dimensionless}+K_T*sigma*p_o, 3{dimensionless})+3{dimensionless}*sqr(K_R)*sqr(sigma)*p_o*133.332{mmHg}*sqr(1{dimensionless}+K_R*sigma*p_o)+K_R*sigma*133.332{mmHg}*pow(1{dimensionless}+K_R*sigma*p_o, 3{dimensionless}))-(L*K_T*sigma*p_o*pow(1{dimensionless}+K_T*sigma*p_o, 3{dimensionless})+K_R*sigma*p_o*pow(1{dimensionless}+K_R*sigma*p_o, 3{dimensionless}))*(4{dimensionless}*L*K_T*sigma*133.332{mmHg}*pow(1{dimensionless}+K_T*sigma*p_o, 3{dimensionless})+4{dimensionless}*K_R*sigma*133.332{mmHg}*pow(1{dimensionless}+K_R*sigma*p_o, 3{dimensionless})))/sqr(L*pow(1{dimensionless}+K_T*sigma*p_o, 4{dimensionless})+pow(1{dimensionless}+K_R*sigma*p_o, 4{dimensionless}));
    // ode(p_o, time) = D_o/(sigma*V_c)*pow(1{dimensionless}+4{dimensionless}/133.332{mmHg}*T_h/sigma*df_satdp, -1{dimensionless})*(f_o*(P_A-P_w)-p_o);
    df_satdp = ((L*pow(1{dimensionless}+K_T*sigma*p_o, 4{dimensionless})+pow(1{dimensionless}+K_R*sigma*p_o, 4{dimensionless}))*(3{dimensionless}*L*sqr(K_T)*sqr(sigma)*p_o*sqr(1{dimensionless}+K_T*sigma*p_o)+L*K_T*sigma*pow(1{dimensionless}+K_T*sigma*p_o, 3{dimensionless})+3{dimensionless}*sqr(K_R)*sqr(sigma)*p_o*sqr(1{dimensionless}+K_R*sigma*p_o)+K_R*sigma*pow(1{dimensionless}+K_R*sigma*p_o, 3{dimensionless}))-(L*K_T*sigma*p_o*pow(1{dimensionless}+K_T*sigma*p_o, 3{dimensionless})+K_R*sigma*p_o*pow(1{dimensionless}+K_R*sigma*p_o, 3{dimensionless}))*(4{dimensionless}*L*K_T*sigma*pow(1{dimensionless}+K_T*sigma*p_o, 3{dimensionless})+4{dimensionless}*K_R*sigma*pow(1{dimensionless}+K_R*sigma*p_o, 3{dimensionless})))/sqr(L*pow(1{dimensionless}+K_T*sigma*p_o, 4{dimensionless})+pow(1{dimensionless}+K_R*sigma*p_o, 4{dimensionless}));
    ode(p_o, time) = D_o/(sigma*V_c)*pow(1{dimensionless}+T_h*df_satdp/(sigma*R*T), -1{dimensionless})*(f_o*(P_A-P_w)-p_o);
    ode(p_c, time) = D_c/(sigma_c*V_c)*(p_ac-p_c)+1{mole_per_L}*delta*l_2/sigma_c*h*z-delta*r_2*p_c;
    ode(z, time) = delta*r_2*sigma_c*p_c/1{mole_per_L}-delta*l_2*h*z;
    ode(C_O2, time) = saturation*Q/100{dimensionless};
  enddef;

  def comp AlveolarRecruitment as
    var time: second {pub: in};
    var k1: per_second {init: 3.462};
    var k2: per_second {init: 1.0};
    var breathsPerMin: per_min {init: 15, pub: out};
    var alevolar_cooperativity: dimensionless {init: 10};
    var Less_active_alveoli: dimensionless {init: 0.5};
    // Assumed initial value
    var Fully_active_alveoli: dimensionless {init: 0.5};
    // So total is 1
    // Define S as normalized breaths per min input, like in original recruitmentFactor
    var S: dimensionless;
    S = breathsPerMin/60.0{dimensionless}/0.64{dimensionless};
    var Ra: dimensionless;
    Ra = 1.0{dimensionless}-k2/(k1*pow(S, alevolar_cooperativity)+k2);
    // recruitmentFactor with Less_active_alveoli
    var recruitmentFactor: dimensionless {pub: out};
    recruitmentFactor = min(max(Fully_active_alveoli, 0.1{dimensionless}), 1.0{dimensionless});
    // ensure that resistance does not go below phyological limits as Less_active_alveoli can go close to zero
    // Define the ODEs for Less_active_alveoli and Fully_active_alveoli
    ode(Less_active_alveoli, time) = -k1*Less_active_alveoli*pow(S, alevolar_cooperativity)+k2*Fully_active_alveoli;
    ode(Fully_active_alveoli, time) = k1*Less_active_alveoli*pow(S, alevolar_cooperativity)-k2*Fully_active_alveoli;
  enddef;

  def comp Acinus as
    var time: second {pub: in};
    var numAlveoli: dimensionless {pub: in};
    var V_lung: L {pub: in};
    // Total lung volume (input to the acinus)
    var Vc: L {init: 0.1818};
    // Volume of the central compartment (conducting airways)
    var VA: L {init: 0.00014, pub: out};
    // Volume of the acinus (alveolar air space) - 4.5 L/ 30000 (acini)
    var Vve: L {init: 1.5082e-05};
    // Volume related to viscoelastic components (tissue compartments)
    var RV: L {init: 1.9};
    // Residual volume (minimum lung volume after full exhalation)
    var TLC: L {init: 7.3};
    // Total lung capacity
    var VD: L {init: 0.185};
    // Dead space volume (non-gas-exchanging airways)
    var breathsPerMin: per_min {pub: in};
    // Breaths per minute
    var Ac: Pa {init: 92685.4};
    // Central airway elastic coefficient
    var Acw: Pa {init: 18307.3};
    // Chest wall pressure coefficient
    var Al: Pa {init: 2614.0};
    // Lung pressure coefficient
    var As: Pa_sec_per_L {init: 28759.3};
    var Bc: Pa {init: 487741.5};
    // Central airway recoil pressure constants
    var Bcp: Pa {init: 48768.4};
    // Central airway recoil pressure constants
    var Bcw: Pa {init: -45751.4};
    // Chest wall pressure decay constant
    var Bl: Pa {init: -6539.6};
    // Lung pressure offset
    var PEEP: Pa {init: 0.0};
    // Positive end expiratory pressure
    var k_peep: dimensionless {init: -0.1};
    // gain factor
    var Bs: Pa {init: 261.5};
    // Serial resistance pressure offset
    var Cve: L_per_Pa {init: 3.827e-5};
    // Viscoelastic compliance
    var Rve: L_per_Pa {init: 7.65e-5};
    // Viscoelastic resistance
    var Kl: per_L {init: 1};
    // Lung elasticity factor
    var Ks: dimensionless {init: -2.5};
    // {init: -10.9};  //-3.1 (COPD) to -10.9 (ARDS)
    // Coefficient for resistance change with volume
    var Vstar: L {init: 5.3};
    // A reference lung volume used in calculations
    var Vcmax: L {init: 0.185};
    // Maximum volume of the central (conducting) compartment
    // var tau: second {init: 0.1};
    var Amus: Pa {init: 26150.4};
    // Muscle pressure amplitude
    // 4.5 L (at max) / 187e-6
    var Vcw: L;
    // Chest wall volume
    var Pcw: Pa;
    // Chest wall pressure
    var Pl: Pa;
    // Lung elastic recoil pressure
    var PA: Pa {pub: out};
    // Alveolar pressure
    var Pc: Pa;
    // Pressure from central airways (elastic recoil of lung)
    var Pve: Pa;
    // Viscoelastic pressure (resistance from tissue deformation)
    var Ppl: Pa;
    // Pleural pressure
    var Pmus: Pa;
    // Muscle pressure (respiratory muscle effort)
    var QA: L_per_second {pub: out};
    // y = 2.500514 + (0.03826521 - 2.500514)/(1 + (x/0.6482999)^9.558973)
    var Al_effective: Pa;
    var Rs: Pa_sec_per_L;
    // Lung pressure reduces with recruitment
    var Bl_effective: Pa;
    // Base line elastic pressure also reduces with recruitment
    var recruitmentFactor: dimensionless {pub: in};
    Al_effective = Al*recruitmentFactor;
    // Linear approximation - recruitment affects both the number of open units and their individual mechanical properties in a non-linear way.
    Bl_effective = Bl*recruitmentFactor+k_peep*PEEP;
    Rs = As*exp(Ks*(V_lung-RV)/(Vstar-RV))+Bs;
    Pl = Al_effective*exp(Kl*V_lung)+Bl_effective;
    Pmus = Amus*sin(6.2831{dimensionless}*breathsPerMin*time*1.6666e-2{dimensionless})+Amus;
    Pc = sel
      case Vc/Vcmax < 0.5{dimensionless}:
        Ac-Bc*sqr(Vc/Vcmax-0.7{dimensionless});
      otherwise:
        5.6{dimensionless}-Bcp*log(Vcmax/Vc-0.999{dimensionless});
    endsel;
    Pve = Vve/Cve;
    Vcw = numAlveoli*VA+VD;
    Pcw = Acw-Bcw*ln((TLC-RV)/(Vcw-RV)-0.999{dimensionless});
    Ppl = -Pcw-Pmus;
    PA = Pl+Pve;
    var JR11: dimensionless;
    var JR2: dimensionless;
    var JR33: dimensionless;
    var U1: dimensionless;
    JR11 = -2{dimensionless};
    JR2 = 1{dimensionless}/numAlveoli;
    JR33 = (Rs+Rve)/Rve;
    U1 = Pcw+Pmus;
    QA = numAlveoli*JR2*(Pc-Pl-Pve)/Rs/1000{dimensionless};
    ode(Vc, time) = (JR11*Pc+Pl+Pve+U1)/Rs;
    ode(VA, time) = JR2*(Pc-Pl-Pve)/Rs;
    ode(Vve, time) = (Pc-Pl-JR33*Pve)/Rs;
  enddef;

  def comp AcinusToLungScaleCoupling as
    var PA_acinus: Pa {pub: in};
    var P_A: Pa {pub: out};
    var VA_acinus: L {pub: in};
    var V_A: L {pub: out};
    var Resistance: dimensionless {pub: out};
    var LungToAcinusVolRatio: dimensionless {init: 24064, pub: out};
    // Ratio of Lung volume to acini volume at full inhalation - 4.5 L (at max) / 187e-6
    var AlveolarResistance: dimensionless {init: 0.65};
    V_A = VA_acinus*LungToAcinusVolRatio;
    // P_A = PA_acinus*133.33{dimensionless}; // 1mmHg = 133.33 Pa
    P_A = PA_acinus;
    Resistance = LungToAcinusVolRatio*AlveolarResistance;
  enddef;
  def map between gasTransport and gasExchange for
    vars p_o and p_o;
    vars D_o and D_o;
    vars f_o and f_o;
    vars P_w and P_w;
    vars p_c and p_c;
    vars D_c and D_c;
    vars p_ac and p_ac;
  enddef;
  def map between Environment and gasTransport for
    vars time and time;
  enddef;
  def map between Environment and AlveolarRecruitment for
    vars time and time;
  enddef;
  def map between Acinus and gasTransport for
    vars PA and P_A;
  enddef;
  def map between Acinus and AlveolarRecruitment for
    vars recruitmentFactor and recruitmentFactor;
    vars breathsPerMin and breathsPerMin;
  enddef;
  def map between gasExchange and AlveolarRecruitment for
    vars breathsPerMin and breathsPerMin;
  enddef;
  def map between Environment and gasExchange for
    vars time and time;
    vars numAlveoli and numAlveoli;
  enddef;
  def map between Acinus and gasExchange for
    vars PA and P_A;
    vars VA and V_A;
  enddef;
  def map between Environment and Acinus for
    vars time and time;
    vars numAlveoli and numAlveoli;
  enddef;
  def map between Acinus and AcinusToLungScaleCoupling for
    vars PA and PA_acinus;
    vars VA and VA_acinus;
    vars V_lung and V_A;
  enddef;
enddef;
