// creator: Family Nunns; Given Geoffrey; Other Rogan; value gnunns1@jhu.edu; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2009-12-02
// isDescribedBy 12972422
// solverHint: initialValue 0.028913120628562; degree 0; #PDE_ACT; #property_35; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 0.0588; degree 0; variable #PKAC_I
// solverHint: initialValue 3.8182; degree 0; #Gs; #property_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 5.833957806072837e-005; degree 0; #A2RC_II; #property_41; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 0.030620759947184; degree 0; #A2R_II; #property_42; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 1.318755891261303e-005; degree 0; #BARK_DESENS; #property_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
// solverHint: initialValue 0.002637049031266; degree 0; #Gsa_GTP_AC; #property_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 0.0471; degree 0; #AC; #property_26; #entity_6; part_of #entity_7; hasPhysicalDefinition http://purl.obolibrary.org/obo/PR_000022358; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340; description Concentration of adenylyl cyclase in the rat ventricular myocyte
// solverHint: initialValue 0.052537266144485; degree 0; #Inhib1p_PP1; #property_52; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 2.632174973738626; degree 0; #PLB_PHOSPH; #property_49; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
// solverHint: initialValue 0.8375; degree 0; #PP1; #property_58; #entity_12; hasPhysicalDefinition http://identifiers.org/go/GO:0000164; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340; description Concentration of Protein phosphatase-1
// solverHint: initialValue 0.004224662072671; degree 0; #LCCa_PHOSPH; #property_60; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
// solverHint: initialValue 0.002349076069413; degree 0; #ARC_II; #property_44; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 0; degree 0; #FSK; #property_25; #entity_5; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:42471; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340; description Concentration of forskolin on the sarcolemma
// solverHint: initialValue 0; degree 0; #IBMX; #property_28; #entity_9; part_of #entity_1; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:48518; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340; description Concentration of IBMX (3-isobutyl-1-methylxanthine)
// reference: Pubmed_id 12972422; Family Saucerman; Given J; Other J; Family Brunton; Given L; Other L; Family Michailova; Given A; Other P; Family McCulloch; Given A; Other D; title Modeling beta-adrenergic control of cardiac myocyte contractility in silico; W3CDTF 2003-11-28; title The Journal of Biological Chemistry; volume 278; first_page 47997; last_page 48003
// solverHint: initialValue 0.002902132276476; degree 0; #A2RC_I; #property_39; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 0.011797127788434; degree 0; #LRG; #property_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 0.0083; degree 0; variable #PKAC_II
// solverHint: initialValue 0.000055258; degree 0; #R; #property_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 0.0001915621321237139; degree 0; #LR; #property_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 0.004069381726891; degree 0; #LCCb_PHOSPH; #property_63; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
// solverHint: initialValue 0.116855995664640; degree 0; #ARC_I; #property_43; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// modelName: saucerman_brunton_michailova_mcculloch_2003
// solverHint: initialValue 0; degree 0; #AC_ACT_FSK; #property_34; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 2.550303598764206e-006; degree 0; #PKA_DESENS; #property_10; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
// reference: subject_type keyword; signal transduction; metabolism; cardiac myocyte; electrophysiology; cardiac
// solverHint: initialValue 0.188856340181038; degree 0; #G_ACT; #property_12; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
// solverHint: initialValue 3.912192345658711; degree 0; #PKA_temp; #property_45; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// modelName: testout
// solverHint: initialValue 0.000062734; degree 0; #Inhib1p; #property_57; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
// solverHint: initialValue 0.699596361354732; degree 0; #Inhib1_PHOSPH; #property_53; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
// solverHint: initialValue 0.215969749518694; degree 0; #A2R_I; #property_40; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 6.393472881317164e-006; degree 0; variable #RG
// solverHint: initialValue 0.2270; degree 0; #cAMP; #property_46; #entity_4; hasPhysicalDefinition http://identifiers.org/go/GO:0006171; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 0.0389; degree 0; #PDE; #property_27; #entity_8; name Concentration of phosphodiesterase; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340; description Concentration of phosphodiesterase
// solverHint: initialValue 0; degree 0; #Fsk_AC; #property_31; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 0.021086469205792; degree 0; #AC_ACT_GSA; #property_32; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 0.9880; degree 0; #L; #property_14; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 0.0224; degree 0; #Gsa_GTP; #property_24; #entity_2; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:15996; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 5.347178381946943e-004; degree 0; #PKI; #property_38; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
// solverHint: initialValue 2.631352403516753; degree 0; #PLB_DEPHOSPH; #property_50; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
// solverHint: initialValue 0.007804801155677; degree 0; #AC_ACT_BASAL; #property_33; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
def model saucerman_brunton_michailova_mcculloch_2003 as
  // Modelling Beta-adrenergic Control of Cardiac Myocyte Contractility in Silico
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML version of the Saucerman and McCulloch 2003 model is a translation of Jeff Saucerman's original MATLAB code. It doesn't run in COR due to the presence of differential algebraic equations (DAEs). Use of additional RDF intial condition hints allow this version to run in the head revision of OpenCell using IDA as the solver. Exporting the CellML to MATLAB using OpenCell and then running the MATLAB output also works. It recreates the results of the original published model. Units require further correction and we are continuting to work on this model.
  //
  // Model Structure
  //
  // ABSTRACT: The beta-adrenergic signaling pathway regulates cardiac myocyte contractility through a combination of feedforward and feedback mechanisms. We used systems analysis to investigate how the components and topology of this signaling network permit neurohormonal control of excitation-contraction coupling in the rat ventricular myocyte. A kinetic model integrating beta-adrenergic signaling with excitation-contraction coupling was formulated, and each subsystem was validated with independent biochemical and physiological measurements. Model analysis was used to investigate quantitatively the effects of specific molecular perturbations. 3-Fold overexpression of adenylyl cyclase in the model allowed an 85% higher rate of cyclic AMP synthesis than an equivalent overexpression of beta 1-adrenergic receptor, and manipulating the affinity of Gs alpha for adenylyl cyclase was a more potent regulator of cyclic AMP production. The model predicted that less than 40% of adenylyl cyclase molecules may be stimulated under maximal receptor activation, and an experimental protocol is suggested for validating this prediction. The model also predicted that the endogenous heat-stable protein kinase inhibitor may enhance basal cyclic AMP buffering by 68% and increasing the apparent Hill coefficient of protein kinase A activation from 1.0 to 2.0. Finally, phosphorylation of the L-type calcium channel and phospholamban were found sufficient to predict the dominant changes in myocyte contractility, including a 2.6x increase in systolic calcium (inotropy) and a 28% decrease in calcium half-relaxation time (lusitropy). By performing systems analysis, the consequences of molecular perturbations in the beta-adrenergic signaling network may be understood within the context of integrative cellular physiology.
  //
  // The original paper reference is cited below:
  //
  // Modeling beta-adrenergic control of cardiac myocyte contractility in silico , Jeffrey J. Saucerman, Laurence L. Brunton, Anushka P. Michailova, and Andrew D. McCulloch, 2003, Journal of Biological Chemistry , 48, 47997-48003. PubMed ID: 12972422 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=12972422&dopt=Abstract)
  //
  // cell diagram
  //
  // Schematic diagram of the integrated model components, including the beta-adrenergic network, calcium handling, and the electrophysiology of the rat ventricular myocyte.
  def unit coulombs_per_mole as
    unit mole {expo: -1.0};
    unit coulomb;
  enddef;
  def unit uM_per_sec as
    unit uM;
    unit second {expo: -1.0};
  enddef;
  def unit per_sec as
    unit second {expo: -1.0};
  enddef;
  def unit uM as
    unit liter {expo: -1.0};
    unit mole {pref: micro};
  enddef;
  def unit uL as
    unit liter {pref: micro};
  enddef;
  def unit per_mV as
    unit mV {expo: -1.0};
  enddef;
  def unit cm_per_sec as
    unit second {expo: -1.0};
    unit meter {pref: centi};
  enddef;
  def unit mM_per_sec as
    unit second {expo: -1.0};
    unit mM;
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit liter {expo: -1.0};
  enddef;
  def unit unknown as
    unit dimensionless;
  enddef;
  def unit mS_per_uF as
    unit siemens {pref: milli};
    unit farad {expo: -1.0, pref: micro};
  enddef;
  def unit joules_per_mole_kelvin as
    unit joule;
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit uA_per_uF as
    unit ampere {pref: micro};
    unit farad {expo: -1.0, pref: micro};
  enddef;
  def unit mV_per_sec as
    unit volt {pref: milli};
    unit second {expo: -1.0};
  enddef;
  def unit cm2 as
    unit meter {expo: 2.0, pref: centi};
  enddef;
  def unit per_uM_per_sec as
    unit second {expo: -1.0};
    unit uM {expo: -1.0};
  enddef;
  def unit per_mM_per_sec as
    unit mM {expo: -1.0};
    unit second {expo: -1.0};
  enddef;

  def comp environment as
    // is: https://identifiers.org/opb/OPB_01023
    var time: second {pub: out};
    var protocol: dimensionless {init: 0, pub: out};
  enddef;

  def comp b1_AR_Gs_parameters as
    var L_totmax: uM {init: 1, pub: out};
    var sum_b1_AR: uM {init: 0.0132, pub: out};
    // isComputationalComponentFor: #property_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Gs_tot: uM {init: 3.83, pub: out};
    // isComputationalComponentFor: #property_1; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Kl: uM {init: 0.285, pub: out};
    var Kr: uM {init: 0.062, pub: out};
    // isComputationalComponentFor: #property_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Kc: uM {init: 33, pub: out};
    var k_bar_kp: per_sec {init: 1.1e-3, pub: out};
    var k_bar_km: per_sec {init: 2.2e-3, pub: out};
    var k_p_kap: per_uM_per_sec {init: 3.6e-3, pub: out};
    var k_p_kam: per_sec {init: 2.2e-3, pub: out};
    var k_g_act: per_sec {init: 16, pub: out};
    var k_hyd: per_sec {init: 0.8, pub: out};
    var k_reassoc: per_uM_per_sec {init: 1.21e3, pub: out};
  enddef;

  def comp cAMP_parameters as
    var AC_tot: uM {init: 49.7e-3, pub: out};
    var ATP: uM {init: 5e3, pub: out};
    var PDE_tot: uM {init: 39e-3, pub: out};
    var IBMX_tot: uM {init: 1, pub: out};
    var Fsk_tot: uM {init: 0, pub: out};
    var k_ac_basal: per_sec {init: 0.2, pub: out};
    var k_ac_gsa: per_sec {init: 8.5, pub: out};
    var k_ac_fsk: per_sec {init: 0, pub: out};
    var k_pde: per_sec {init: 5, pub: out};
    var Km_basal: uM {init: 1.03e3, pub: out};
    var Km_gsa: uM {init: 315, pub: out};
    var Km_fsk: uM {init: 860, pub: out};
    var Km_pde: uM {init: 1.3, pub: out};
    var K_gsa: uM {init: 0.4, pub: out};
    var K_fsk: uM {init: 44, pub: out};
    var Ki_ibmx: uM {init: 30, pub: out};
  enddef;

  def comp PKA_parameters as
    var PKAI_tot: uM {init: 0.59, pub: out};
    var PKAII_tot: uM {init: 0.025, pub: out};
    var PKI_tot: uM {init: 0.18, pub: out};
    var K_a: uM {init: 9.14, pub: out};
    var K_b: uM {init: 1.64, pub: out};
    var K_d: uM {init: 4.375, pub: out};
    var Ki_pki: uM {init: 0.2e-3, pub: out};
  enddef;

  def comp PLB_parameters as
    var PLB_tot: uM {init: 106, pub: out};
    var PP1_tot: uM {init: 0.89, pub: out};
    var Inhib1_tot: uM {init: 0.3, pub: out};
    var k_pka_plb: per_sec {init: 54, pub: out};
    var Km_pka_plb: uM {init: 21, pub: out};
    var k_pp1_plb: per_sec {init: 8.5, pub: out};
    var Km_pp1_plb: uM {init: 7, pub: out};
    var k_pka_i1: per_sec {init: 60, pub: out};
    var Km_pka_i1: uM {init: 1, pub: out};
    var Vmax_pp2a_i1: uM_per_sec {init: 14, pub: out};
    var Km_pp2a_i1: uM {init: 1, pub: out};
    var Ki_inhib1: uM {init: 1e-3, pub: out};
  enddef;

  def comp LCC_parameters as
    var epsilon: dimensionless {init: 10, pub: out};
    var LCC_tot: uM {init: 25e-3, pub: out};
    var PP1_lcc_tot: uM {init: 25e-3, pub: out};
    var PP2A_lcc_tot: uM {init: 25e-3, pub: out};
    var k_pka_lcc: per_sec {init: 54, pub: out};
    var Km_pka_lcc: uM {init: 21, pub: out};
    var k_pp1_lcc: per_sec {init: 8.52, pub: out};
    var Km_pp1_lcc: uM {init: 3, pub: out};
    var k_pp2a_lcc: per_sec {init: 10.1, pub: out};
    var Km_pp2a_lcc: uM {init: 3, pub: out};
  enddef;

  def comp EC_Coupling_Parameters as
    var V_myo: uL {init: 20.8e-6, pub: out};
    var V_nsr: uL {init: 9.88e-7, pub: out};
    var V_jsr: uL {init: 9.3e-8, pub: out};
    var A_Cap: cm2 {init: 1.534e-4, pub: out};
    var Temp: kelvin {init: 310, pub: out};
    var Na_ext: mM {init: 140, pub: out};
    var K_ext: mM {init: 5.4, pub: out};
    var Ca_ext: mM {init: 1.8, pub: out};
    var G_Na: mS_per_uF {init: 8, pub: out};
    var G_to: mS_per_uF {init: 0.35, pub: out};
    var G_ss: mS_per_uF {init: 0.07, pub: out};
    var G_Ki_bar: mS_per_uF {init: 0.24, pub: out};
    var G_Kp: mS_per_uF {init: 0.008, pub: out};
    var f: per_sec {init: 300, pub: out};
    var g: per_sec {init: 2e3, pub: out};
    var gamma_o: per_mM_per_sec {init: 5187.5, pub: out};
    var omega: per_sec {init: 10, pub: out};
    var p_Ca: cm_per_sec {init: 1.7469e-8, pub: out};
    var p_K: cm_per_sec {init: 3.234e-11, pub: out};
    var N_lcc: dimensionless {init: 3e5, pub: out};
    var I_Ca05: uA_per_uF {init: -0.458, pub: out};
    var k_NaCa: uA_per_uF {init: 1483, pub: out};
    var Km_Na: mM {init: 87.5, pub: out};
    var Km_Ca: mM {init: 1.38, pub: out};
    var k_sat: dimensionless {init: 0.1, pub: out};
    var eta: dimensionless {init: 0.35, pub: out};
    var I_bar_NaK: uA_per_uF {init: 1.1, pub: out};
    var Km_Nai: mM {init: 10, pub: out};
    var Km_Ko: mM {init: 1.5, pub: out};
    var I_bar_PCa: uA_per_uF {init: 1.15, pub: out};
    var Km_PCa: mM {init: 0.5e-3, pub: out};
    var G_CaB: uA_per_uF {init: 2.8e-3, pub: out};
    var G_NaB: uA_per_uF {init: 1.18e-3, pub: out};
    var Pns: dimensionless {init: 0, pub: out};
    var Km_NS: mM {init: 1.2e-3, pub: out};
    var I_up_bar: mM_per_sec {init: 4.7, pub: out};
    var Km_up0: mM {init: 3e-4, pub: out};
    var NSR_bar: mM {init: 15, pub: out};
    var tau_on: second {init: 2e-3, pub: out};
    var tau_off: second {init: 2e-3, pub: out};
    var G_max_rel: mM_per_sec {init: 60e3, pub: out};
    var d_Cai_th: mM {init: 0.18e-3, pub: out};
    var Km_rel: mM {init: 0.8e-3, pub: out};
    var CSQN_th: mM {init: 8.75, pub: out};
    var CSQN_bar: mM {init: 15, pub: out};
    var Km_CSQN: mM {init: 0.8, pub: out};
    var tau_tr: second {init: 5.7e-4, pub: out};
    var TRPN_bar: mM {init: 0.07, pub: out};
    var CMDN_bar: mM {init: 0.05, pub: out};
    var INDO_bar: mM {init: 0.07, pub: out};
    var Km_TRPN: mM {init: 0.5128e-3, pub: out};
    var Km_CMDN: mM {init: 2.38e-3, pub: out};
    var Km_INDO: mM {init: 8.44e-4, pub: out};
  enddef;

  def comp b1_AR_module as
    // is: https://identifiers.org/opb/OPB_01023
    var time: second {pub: in};
    var L_totmax: uM {pub: in};
    var sum_b1_AR: uM {pub: in};
    // isComputationalComponentFor: #property_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Gs_tot: uM {pub: in};
    // isComputationalComponentFor: #property_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Kl: uM {pub: in};
    var Kr: uM {pub: in};
    // isComputationalComponentFor: #property_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Kc: uM {pub: in};
    var k_bar_kp: per_sec {pub: in};
    var k_bar_km: per_sec {pub: in};
    var k_p_kap: per_uM_per_sec {pub: in};
    var k_p_kam: per_sec {pub: in};
    var k_g_act: per_sec {pub: in};
    var k_hyd: per_sec {pub: in};
    var k_reassoc: per_uM_per_sec {pub: in};
    var LR: uM {pub: out};
    var LRG: uM {pub: out};
    var RG: uM {pub: out};
    var BARK_DESENS: uM_per_sec;
    // isComputationalComponentFor: #property_9; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var BARK_RESENS: uM_per_sec;
    var PKA_DESENS: uM_per_sec;
    // isComputationalComponentFor: #property_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var PKA_RESENS: uM_per_sec;
    var G_ACT: uM_per_sec;
    // isComputationalComponentFor: #property_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var HYD: uM_per_sec;
    var REASSOC: per_sec;
    var L: uM {pub: out};
    var R: uM {pub: out};
    var Gs: uM {pub: out};
    // isComputationalComponentFor: #property_17; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of beta1-adrenergic signaling in the cardiac myocyte
    var b1_AR_tot: uM {init: 0.01205, pub: out};
    // isComputationalComponentFor: #property_18; #entity_0; part_of #entity_1; hasPhysicalDefinition https://identifiers.org/uniprot/P18090; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Beta1-specific in activation by phosphorylation at S464 by beta-adrenergic receptor kinase.
    var b1_AR_d: uM {init: 0, pub: out};
    // isComputationalComponentFor: #property_19; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Beta1-specific in activation by phosphorylation at S301 by beta-adrenergic receptor kinase.
    var b1_AR_p: uM {init: 1.154e-3, pub: out};
    // isComputationalComponentFor: #property_20; physicalPropertyOf #entity_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of GTP-bound G_s alpha
    var Gs_agtp_tot: uM {init: 0.02505, pub: out};
    // isComputationalComponentFor: #property_21; #entity_3; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:17552; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Gs_agdp: uM {init: 6.446e-4, pub: out};
    // isComputationalComponentFor: #property_22; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Gs_bg: uM {init: 0.02569, pub: out};
    var PKAC_I: uM {pub: in};
    LR = L*R/Kl;
    LRG = LR*Gs/Kr;
    RG = R*Gs/Kc;
    BARK_DESENS = k_bar_kp*(LR+LRG);
    BARK_RESENS = k_bar_km*b1_AR_d;
    PKA_DESENS = k_p_kap*PKAC_I*b1_AR_tot;
    PKA_RESENS = k_p_kam*b1_AR_p;
    G_ACT = k_g_act*(RG+LRG);
    HYD = k_hyd*Gs_agtp_tot;
    REASSOC = k_reassoc*Gs_agdp*Gs_bg/1{uM};
    L = L_totmax-LR-LRG;
    R = b1_AR_tot-LR-LRG-RG;
    Gs = Gs_tot-LRG-RG;
    ode(b1_AR_tot, time) = BARK_RESENS-BARK_DESENS+PKA_RESENS-PKA_DESENS;
    ode(b1_AR_d, time) = BARK_DESENS-BARK_RESENS;
    ode(b1_AR_p, time) = PKA_DESENS-PKA_RESENS;
    ode(Gs_agtp_tot, time) = G_ACT-HYD;
    ode(Gs_agdp, time) = HYD-REASSOC*1{uM};
    ode(Gs_bg, time) = G_ACT-REASSOC*1{uM};
  enddef;

  def comp cAMP_module as
    // is: https://identifiers.org/opb/OPB_01023
    var time: second {pub: in};
    var AC_tot: uM {pub: in};
    var ATP: uM {pub: in};
    var PDE_tot: uM {pub: in};
    var IBMX_tot: uM {pub: in};
    var Fsk_tot: uM {pub: in};
    var k_ac_basal: per_sec {pub: in};
    var k_ac_gsa: per_sec {pub: in};
    var k_ac_fsk: per_sec {pub: in};
    var k_pde: per_sec {pub: in};
    var Km_basal: uM {pub: in};
    var Km_gsa: uM {pub: in};
    var Km_fsk: uM {pub: in};
    var Km_pde: uM {pub: in};
    var K_gsa: uM {pub: in};
    var K_fsk: uM {pub: in};
    var Ki_ibmx: uM {pub: in};
    // isComputationalComponentFor: #property_23; physicalPropertyOf #entity_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var cAMP: uM {pub: in};
    var Gsa_GTP: uM;
    var Fsk: uM;
    var AC: uM;
    var PDE: uM;
    var IBMX: uM;
    // isComputationalComponentFor: #property_29; physicalPropertyOf #entity_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of cyclic AMP
    var cAMP_tot: uM {init: 0.8453, pub: out};
    var Gsa_GTP_AC: uM;
    var Fsk_AC: uM;
    var AC_ACT_GSA: uM;
    var AC_ACT_BASAL: uM;
    var AC_ACT_FSK: uM;
    var PDE_ACT: uM;
    // isComputationalComponentFor: #property_36; #entity_10; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:48518; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of nonspecific phosphodiesterase inhibitor IBMX
    var PDE_IBMX: uM;
    // isComputationalComponentFor: #property_37; physicalPropertyOf #entity_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of GTP-bound G_s alpha
    var Gs_agtp_tot: uM {pub: in};
    Gsa_GTP_AC = Gsa_GTP*AC/K_gsa;
    Fsk_AC = Fsk*AC/K_fsk;
    AC_ACT_BASAL = k_ac_basal*AC*ATP/(Km_basal+ATP);
    AC_ACT_GSA = k_ac_gsa*Gsa_GTP_AC*ATP/(Km_gsa+ATP);
    AC_ACT_FSK = k_ac_fsk*Fsk_AC*ATP/(Km_fsk+ATP);
    PDE_ACT = k_pde*PDE*cAMP/(Km_pde+cAMP);
    PDE_IBMX = PDE*IBMX/Ki_ibmx;
    Gsa_GTP = Gs_agtp_tot-Gsa_GTP_AC;
    Fsk = Fsk_tot-Fsk_AC;
    AC = AC_tot-Gsa_GTP_AC;
    PDE = PDE_tot-PDE_IBMX;
    IBMX = IBMX_tot-PDE_IBMX;
    ode(cAMP_tot, time) = AC_ACT_BASAL+AC_ACT_GSA-PDE_ACT+AC_ACT_FSK;
  enddef;

  def comp PKA_module as
    var PKAI_tot: uM {pub: in};
    var PKAII_tot: uM {pub: in};
    var PKI_tot: uM {pub: in};
    var K_a: uM {pub: in};
    var K_b: uM {pub: in};
    var K_d: uM {pub: in};
    var Ki_pki: uM {pub: in};
    var PKI: uM;
    var A2RC_I: uM;
    var A2R_I: uM;
    var A2RC_II: uM;
    var A2R_II: uM;
    var ARC_I: uM;
    var ARC_II: uM;
    var PKA_temp: uM;
    var cAMP: uM {pub: out};
    var PKAC_I: uM {pub: out};
    var PKAC_II: uM {pub: out};
    // isComputationalComponentFor: #property_47; physicalPropertyOf #entity_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of cyclic AMP
    var cAMP_tot: uM {pub: in};
    var zed: dimensionless {init: 0};
    var zed1: dimensionless {init: 0};
    PKI = PKI_tot*Ki_pki/(Ki_pki+PKAC_I+PKAC_II);
    A2RC_I = PKAC_I/K_d*PKAC_I*(1{dimensionless}+PKI/Ki_pki);
    A2R_I = PKAC_I*(1{dimensionless}+PKI/Ki_pki);
    A2RC_II = PKAC_II/K_d*PKAC_II*(1{dimensionless}+PKI/Ki_pki);
    A2R_II = PKAC_II*(1{dimensionless}+PKI/Ki_pki);
    ARC_I = K_a/cAMP*A2RC_I;
    ARC_II = K_a/cAMP*A2RC_II;
    PKA_temp = K_a*K_b/K_d+K_a*cAMP/K_d+sqr(cAMP)/K_d;
    cAMP = cAMP_tot-(ARC_I+2{dimensionless}*A2RC_I+2{dimensionless}*A2R_I)-(ARC_II+2{dimensionless}*A2RC_II+2{dimensionless}*A2R_II);
    zed = 2{dimensionless}*PKAI_tot*sqr(cAMP)-PKAC_I*(1{dimensionless}+PKI/Ki_pki)*(PKA_temp*PKAC_I+sqr(cAMP));
    zed1 = 2{dimensionless}*PKAII_tot*sqr(cAMP)-PKAC_II*(1{dimensionless}+PKI/Ki_pki)*(PKA_temp*PKAC_II+sqr(cAMP));
  enddef;

  def comp PLB_module as
    // is: https://identifiers.org/opb/OPB_01023
    var time: second {pub: in};
    var PLB_tot: uM {pub: in};
    var PP1_tot: uM {pub: in};
    var Inhib1_tot: uM {pub: in};
    var k_pka_plb: per_sec {pub: in};
    var Km_pka_plb: uM {pub: in};
    var k_pp1_plb: per_sec {pub: in};
    var Km_pp1_plb: uM {pub: in};
    var k_pka_i1: per_sec {pub: in};
    var Km_pka_i1: uM {pub: in};
    var Vmax_pp2a_i1: uM_per_sec {pub: in};
    var Km_pp2a_i1: uM {pub: in};
    var Ki_inhib1: uM {pub: in};
    // isComputationalComponentFor: #property_48; #entity_11; hasPhysicalDefinition http://identifiers.org/go/GO:1990629; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of phospholamban
    var PLB: uM;
    var PLB_PHOSPH: uM_per_sec;
    var PLB_DEPHOSPH: uM_per_sec;
    // isComputationalComponentFor: #property_51; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Inhib1: uM;
    var Inhib1p_PP1: uM;
    var Inhib1_PHOSPH: uM_per_sec;
    // isComputationalComponentFor: #property_54; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var Inhib1_DEPHOSPH: uM_per_sec;
    // isComputationalComponentFor: #property_55; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PLB_p: uM {init: 4.105};
    // isComputationalComponentFor: #property_56; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Inhib1p_tot: uM {init: 0.0526};
    var Inhib1p: uM;
    var PP1: uM;
    var frac_PLB_p: dimensionless;
    var frac_PLB: dimensionless {pub: out};
    var frac_PLB_o: dimensionless {pub: out};
    var PKAC_I: uM {pub: in};
    PLB = PLB_tot-PLB_p;
    PLB_PHOSPH = k_pka_plb*PKAC_I*PLB/(Km_pka_plb+PLB);
    PLB_DEPHOSPH = k_pp1_plb*PP1*PLB_p/(Km_pp1_plb+PLB_p);
    Inhib1 = Inhib1_tot-Inhib1p_tot;
    Inhib1p_PP1 = Inhib1p*PP1/Ki_inhib1;
    Inhib1_PHOSPH = k_pka_i1*PKAC_I*Inhib1/(Km_pka_i1+Inhib1);
    Inhib1_DEPHOSPH = Vmax_pp2a_i1*Inhib1p_tot/(Km_pp2a_i1+Inhib1p_tot);
    ode(PLB_p, time) = PLB_PHOSPH-PLB_DEPHOSPH;
    ode(Inhib1p_tot, time) = Inhib1_PHOSPH-Inhib1_DEPHOSPH;
    Inhib1p = Inhib1p_tot-Inhib1p_PP1;
    PP1 = PP1_tot-Inhib1p_PP1;
    frac_PLB_p = PLB_p/PLB_tot;
    frac_PLB = PLB/PLB_tot;
    frac_PLB_o = 0.9613{dimensionless};
  enddef;

  def comp LCC_module as
    // is: https://identifiers.org/opb/OPB_01023
    var time: second {pub: in};
    var epsilon: dimensionless {pub: in};
    var LCC_tot: uM {pub: in};
    var PP1_lcc_tot: uM {pub: in};
    var PP2A_lcc_tot: uM {pub: in};
    var k_pka_lcc: per_sec {pub: in};
    var Km_pka_lcc: uM {pub: in};
    var k_pp1_lcc: per_sec {pub: in};
    var Km_pp1_lcc: uM {pub: in};
    var k_pp2a_lcc: per_sec {pub: in};
    var Km_pp2a_lcc: uM {pub: in};
    // isComputationalComponentFor: #property_59; physicalPropertyOf #entity_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var LCCa: uM;
    var LCCa_PHOSPH: uM_per_sec;
    // isComputationalComponentFor: #property_61; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var LCCa_DEPHOSPH: uM_per_sec;
    // isComputationalComponentFor: #property_62; physicalPropertyOf #entity_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var LCCb: uM;
    var LCCb_PHOSPH: uM_per_sec;
    // isComputationalComponentFor: #property_64; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var LCCb_DEPHOSPH: uM_per_sec;
    // isComputationalComponentFor: #property_65; #entity_13; hasPhysicalDefinition http://identifiers.org/go/GO:1990454; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var LCCa_p: uM {init: 5.103e-3};
    // isComputationalComponentFor: #property_66; physicalPropertyOf #entity_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var LCCb_p: uM {init: 5.841e-3};
    var frac_LCCa_p: dimensionless {pub: out};
    var frac_LCCa_po: dimensionless {pub: out};
    var frac_LCCb_p: dimensionless {pub: out};
    var frac_LCCb_po: dimensionless {pub: out};
    var PKAC_II: uM {pub: in};
    LCCa = LCC_tot-LCCa_p;
    LCCa_PHOSPH = epsilon*k_pka_lcc*PKAC_II*LCCa/(Km_pka_lcc+epsilon*LCCa);
    LCCa_DEPHOSPH = epsilon*k_pp2a_lcc*PP2A_lcc_tot*LCCa_p/(Km_pp2a_lcc+epsilon*LCCa_p);
    LCCb = LCC_tot-LCCb_p;
    LCCb_PHOSPH = epsilon*k_pka_lcc*PKAC_II*LCCb/(Km_pka_lcc+epsilon*LCCb);
    LCCb_DEPHOSPH = epsilon*k_pp1_lcc*PP1_lcc_tot*LCCb_p/(Km_pp1_lcc+epsilon*LCCb_p);
    ode(LCCa_p, time) = LCCa_PHOSPH-LCCa_DEPHOSPH;
    ode(LCCb_p, time) = LCCb_PHOSPH-LCCb_DEPHOSPH;
    frac_LCCa_p = LCCa_p/LCC_tot;
    frac_LCCa_po = 0.2041{dimensionless};
    frac_LCCb_p = LCCb_p/LCC_tot;
    frac_LCCb_po = 0.2336{dimensionless};
  enddef;

  def comp Nernst_Potentials as
    // isComputationalComponentFor: #property_67; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Sodium nernst potential
    var E_Na: mV {pub: out};
    // isComputationalComponentFor: #property_68; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Potassium nernst potentials
    var E_K: mV {pub: out};
    // isComputationalComponentFor: #property_69; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Calcium Nernst potential
    var E_Ca: mV {pub: out};
    var E_Cl: mV {pub: out};
    var R: joules_per_mole_kelvin {init: 8314};
    var Frdy: coulombs_per_mole {init: 96485, pub: out};
    var FoRT: per_mV {pub: out};
    var z_Na: dimensionless {init: 1, pub: out};
    var z_K: dimensionless {init: 1, pub: out};
    var z_Ca: dimensionless {init: 2, pub: out};
    var Temp: kelvin {pub: in};
    var Na_ext: mM {pub: in};
    var K_ext: mM {pub: in};
    var Ca_ext: mM {pub: in};
    // isComputationalComponentFor: #property_70; physicalPropertyOf #entity_14; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular sodium in the rat ventricular myocyte
    var Na_i: mM {pub: in};
    // isComputationalComponentFor: #property_71; #entity_15; part_of #entity_1; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29103; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular potassium in the rat ventricular myocyte.
    var K_i: mM {pub: in};
    // isComputationalComponentFor: #property_72; physicalPropertyOf #entity_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular calcium in the rat ventricular myocyte
    var Ca_i: mM {pub: in};
    FoRT = Frdy/R/Temp;
    E_Na = 1{dimensionless}/(FoRT*z_Na)*ln(Na_ext/Na_i);
    E_K = 1{dimensionless}/(FoRT*z_K)*ln(K_ext/K_i);
    E_Ca = 1{dimensionless}/(FoRT*z_Ca)*ln(Ca_ext/Ca_i);
    E_Cl = -40{mV};
  enddef;

  def comp Fast_Na_Current as
    // is: https://identifiers.org/opb/OPB_01023
    var time: second {pub: in};
    var am: per_sec;
    var bm: per_sec;
    var ah: per_sec;
    var aj: per_sec;
    var bh: per_sec;
    var bj: per_sec;
    var m: dimensionless {init: 1.4e-3};
    var h: dimensionless {init: 0.99};
    var j: dimensionless {init: 0.99};
    // isComputationalComponentFor: #property_73; #process_0; #mediator_0; #entity_20; #entity_21; hasPhysicalDefinition http://identifiers.org/fma/FMA:67964; hasPhysicalDefinition http://identifiers.org/go/GO:0034706; #sink_0; hasMultiplier 1.0; #entity_19; part_of #entity_7; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29101; #source_0; hasMultiplier 1.0; #entity_17; part_of #entity_18; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29101; name Sodium flux across sarcolemma of rat ventricular myocyte; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Na+ flux across sarcolemma of rat ventricular myocyte
    var I_Na: uA_per_uF {pub: out};
    // isComputationalComponentFor: #property_74; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Sarcoplasm membrane potential
    var V_m: mV {pub: in};
    // isComputationalComponentFor: #property_75; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Sodium nernst potential
    var E_Na: mV {pub: in};
    var G_Na: mS_per_uF {pub: in};
    am = 0.32{dimensionless}*(V_m+47.13{mV})/(1{mV}-exp(-0.1{per_mV}*(V_m+47.13{mV})));
    bm = 0.08{dimensionless}*exp(-V_m/11{mV});
    ah = sel
      case V_m >= -40{mV}:
        0{dimensionless};
      otherwise:
        0.135{dimensionless}*exp((80{mV}+V_m)/(-6.8{mV}));
    endsel;
    aj = sel
      case V_m >= -40{mV}:
        0{dimensionless};
      otherwise:
        (-1.2714e5{dimensionless}*exp(0.2444{per_mV}*V_m)-3.474e-5{dimensionless}*exp(-0.04391{per_mV}*V_m))*(V_m+37.78{mV})/(1{unknown}+exp(0.311{per_mV}*(V_m+79.23{mV})));
    endsel;
    bh = sel
      case V_m >= -40{mV}:
        1{dimensionless}/(0.13{dimensionless}*(1{dimensionless}+exp(-(V_m+10.66{mV})/11.1{mV})));
      otherwise:
        3.56{dimensionless}*exp(0.079{per_mV}*V_m)+3.1e5{dimensionless}*exp(0.35{per_mV}*V_m);
    endsel;
    bj = sel
      case V_m >= -40{mV}:
        0.3{dimensionless}*exp(-2.575e-7{per_mV}*V_m)/(1{dimensionless}+exp(-0.1{per_mV}*(V_m+32{mV})));
      otherwise:
        0.1212{dimensionless}*exp(-0.01052{per_mV}*V_m)/(1{dimensionless}+exp(-0.1378{per_mV}*(V_m+40.14{mV})));
    endsel;
    ode(m, time) = 1e3{unknown}*(am*(1{unknown}-m)-bm*m);
    ode(h, time) = 1e3{unknown}*(ah*(1{unknown}-h)-bh*h);
    ode(j, time) = 1e3{unknown}*(aj*(1{unknown}-j)-bj*j);
    I_Na = G_Na*pow(m, 3{dimensionless})*h*j*(V_m-E_Na);
  enddef;

  def comp L_Type_Calcium_Current as
    var a_lcc: per_sec;
    var b_lcc: per_sec;
    var f_lcc: dimensionless;
    var y_lcc_inf: dimensionless;
    var tau_y_lcc: second;
    var gamma: per_mM_per_sec;
    var v_gamma: per_mM_per_sec;
    var v_omega: dimensionless;
    var v: dimensionless {init: 0};
    var w: dimensionless {init: 0};
    var x: dimensionless {init: 0.13};
    var y: dimensionless {init: 0.96};
    var z: dimensionless {init: 0.92};
    var i_bar_Ca: dimensionless;
    var i_bar_K: dimensionless;
    var f_avail: dimensionless;
    // isComputationalComponentFor: #property_76; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: L-Type calcium current
    var I_Ca: uA_per_uF {pub: out};
    // isComputationalComponentFor: #property_77; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Potassium current through the channel
    var I_CaK: uA_per_uF {pub: out};
    // isComputationalComponentFor: #property_78; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Total L-type Ca2+ current
    var I_Ca_tot: uA_per_uF {pub: out};
    // is: https://identifiers.org/opb/OPB_01023
    var time: second {pub: in};
    var K_ext: mM {pub: in};
    var Ca_ext: mM {pub: in};
    var f: per_sec {pub: in};
    var g: per_sec {pub: in};
    var gamma_o: per_mM_per_sec {pub: in};
    var omega: per_sec {pub: in};
    var p_Ca: cm_per_sec {pub: in};
    var p_K: cm_per_sec {pub: in};
    var N_lcc: dimensionless {pub: in};
    var I_Ca05: uA_per_uF {pub: in};
    var frac_LCCa_p: dimensionless {pub: in};
    var frac_LCCa_po: dimensionless {pub: in};
    var frac_LCCb_p: dimensionless {pub: in};
    var frac_LCCb_po: dimensionless {pub: in};
    var Frdy: coulombs_per_mole {pub: in};
    var FoRT: per_mV {pub: in};
    // isComputationalComponentFor: #property_79; physicalPropertyOf #entity_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular potassium in the rat ventricular myocyte.
    var K_i: mM {pub: in};
    // isComputationalComponentFor: #property_80; physicalPropertyOf #entity_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular calcium in the rat ventricular myocyte
    var Ca_i: mM {pub: in};
    // isComputationalComponentFor: #property_81; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Sarcoplasm membrane potential
    var V_m: mV {pub: in};
    a_lcc = 400{per_sec}*exp((V_m+2{mV})/10{mV});
    b_lcc = 50{per_sec}*exp(-1{dimensionless}*(V_m+2{mV})/13{mV});
    f_lcc = f*(0.375{unknown}*frac_LCCa_p/frac_LCCa_po+0.625{dimensionless});
    y_lcc_inf = 1{unknown}/(1{unknown}+exp((V_m+55{mV})/7.5{mV}))+0.1{dimensionless}/(1{unknown}+exp((-V_m+21{mV})/6{mV}));
    tau_y_lcc = 0.02{second}+0.3{second}/(1{dimensionless}+exp((V_m+30{mV})/9.5{mV}));
    gamma = gamma_o*Ca_i;
    v_gamma = gamma*(pow(1{unknown}-v, 4{dimensionless})+2{unknown}*v*pow(1{unknown}-v, 3{dimensionless})+4{unknown}*sqr(v)*sqr(1{unknown}-v)+8{unknown}*pow(v, 3{dimensionless})*(1{unknown}-v)+16{unknown}*pow(v, 4{dimensionless})*(1{unknown}-f_lcc/g));
    v_omega = omega*(pow(1{dimensionless}-w, 4{dimensionless})+0.5{unknown}*w*pow(1{unknown}-w, 3{dimensionless})+0.25{unknown}*sqr(w)*sqr(1{unknown}-w)+0.125{unknown}*pow(w, 3{dimensionless})*(1{unknown}-w)+0.0625{unknown}*pow(w, 4{dimensionless}));
    ode(v, time) = a_lcc*(1{dimensionless}-v)-b_lcc*v;
    ode(w, time) = 2{dimensionless}*a_lcc*(1{dimensionless}-w)-b_lcc/2{dimensionless}*w;
    ode(x, time) = f_lcc*(1{dimensionless}-x)-g*x;
    ode(y, time) = (y_lcc_inf-y)/tau_y_lcc;
    ode(z, time) = v_omega*(1{dimensionless}-z)-v_gamma*z;
    i_bar_Ca = p_Ca*4{dimensionless}*V_m*Frdy*FoRT*(1e-3{dimensionless}*exp(2{unknown}*V_m*FoRT)-0.341{dimensionless}*Ca_ext)/(exp(2{dimensionless}*V_m*FoRT)-1{dimensionless});
    i_bar_K = p_K*V_m*Frdy*FoRT*(K_i*exp(V_m*FoRT)-K_ext)/(exp(V_m*FoRT)-1{dimensionless});
    f_avail = 0.5{unknown}*(0.4{unknown}*frac_LCCb_p/frac_LCCb_po+0.6{dimensionless});
    I_Ca = i_bar_Ca*N_lcc*f_avail*pow(v, 4{dimensionless})*x*y*z;
    I_CaK = i_bar_K/(1{dimensionless}+I_Ca/I_Ca05)*N_lcc*f_avail*pow(v, 4{dimensionless})*x*y*z;
    I_Ca_tot = I_Ca+I_CaK;
  enddef;

  def comp Transient_Outward_K_Current as
    // is: https://identifiers.org/opb/OPB_01023
    var time: second {pub: in};
    var r_toss: dimensionless;
    var s_toss: dimensionless;
    var tau_r_to: second;
    var tau_s_to: second;
    var tau_ss_to: second;
    var r_to: dimensionless {init: 1.4e-3};
    var s_to: dimensionless {init: 1};
    var ss_to: dimensionless {init: 0.613};
    // isComputationalComponentFor: #property_82; #process_1; name Transient Outward K+ current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Transient Outward K+ current
    var I_to: uA_per_uF {pub: out};
    // isComputationalComponentFor: #property_83; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Sarcoplasm membrane potential
    var V_m: mV {pub: in};
    // isComputationalComponentFor: #property_84; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Potassium nernst potentials
    var E_K: mV {pub: in};
    var G_to: mS_per_uF {pub: in};
    r_toss = 1{dimensionless}/(1{dimensionless}+exp((V_m+10.6{mV})/(-11.42{mV})));
    s_toss = 1{dimensionless}/(1{dimensionless}+exp((V_m+43.5{mV})/6.8841{mV}));
    tau_r_to = 1{dimensionless}/(45.16{dimensionless}*exp(0.03577{per_mV}*(V_m+50{mV}))+98.9{dimensionless}*exp(-0.1{per_mV}*(V_m+38{mV})));
    tau_s_to = 0.35{second}*exp(-1{dimensionless}*sqr((V_m+70{mV})/15{dimensionless}))+0.035{second};
    tau_ss_to = 3.7{second}*exp(-1{dimensionless}*sqr((V_m+70{mV})/30{dimensionless}))+0.035{second};
    ode(r_to, time) = (r_toss-r_to)/tau_r_to;
    ode(s_to, time) = (s_toss-s_to)/tau_s_to;
    ode(ss_to, time) = (s_toss-ss_to)/tau_ss_to;
    I_to = G_to*r_to*(0.886{dimensionless}*s_to+0.114{dimensionless}*ss_to)*(V_m-E_K);
  enddef;

  def comp Steady_State_K_Current as
    // is: https://identifiers.org/opb/OPB_01023
    var time: second {pub: in};
    var r_ss_inf: dimensionless;
    var tau_r_ss: second;
    var s_ss_inf: dimensionless;
    var tau_s_ss: second;
    var r_ss: dimensionless {init: 198e-3};
    var s_ss: dimensionless {init: 0.43};
    // isComputationalComponentFor: #property_85; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Subspace steady state current across sarcolemma
    var I_ss: uA_per_uF {pub: out};
    // isComputationalComponentFor: #property_86; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Sarcoplasm membrane potential
    var V_m: mV {pub: in};
    // isComputationalComponentFor: #property_87; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Potassium nernst potentials
    var E_K: mV {pub: in};
    var G_ss: mS_per_uF {pub: in};
    r_ss_inf = 1{dimensionless}/(1{dimensionless}+exp((V_m+11.5{mV})/(-11.82{mV})));
    tau_r_ss = 10{dimensionless}/(45.16{dimensionless}*exp(0.03577{per_mV}*(V_m+50{mV}))+98.9{dimensionless}*exp(-0.1{per_mV}*(V_m+38{mV})));
    s_ss_inf = 1{dimensionless}/(1{dimensionless}+exp((V_m+87.5{mV})/10.3{mV}));
    tau_s_ss = 2.1{unknown};
    ode(r_ss, time) = (r_ss_inf-r_ss)/tau_r_ss;
    ode(s_ss, time) = (s_ss_inf-s_ss)/tau_s_ss;
    I_ss = G_ss*r_ss*s_ss*(V_m-E_K);
  enddef;

  def comp Time_Independent_K_Current as
    var a_Ki: dimensionless;
    var b_Ki: dimensionless;
    var Ki_ss: dimensionless;
    // isComputationalComponentFor: #property_88; physicalPropertyOf #process_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Time independent K+ current across sarcolemma
    var I_Ki: uA_per_uF {pub: out};
    // isComputationalComponentFor: #property_89; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Sarcoplasm membrane potential
    var V_m: mV {pub: in};
    // isComputationalComponentFor: #property_90; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Potassium nernst potentials
    var E_K: mV {pub: in};
    var G_Ki_bar: mS_per_uF {pub: in};
    var K_ext: mM {pub: in};
    a_Ki = 1.02{dimensionless}/(1{dimensionless}+exp(0.2385{per_mV}*(V_m-E_K-59.215{mV})));
    b_Ki = (0.49124{dimensionless}*exp(0.08032{per_mV}*(V_m+5.476{mV}-E_K))+exp(0.06175{per_mV}*(V_m-E_K-594.31{mV})))/(1{dimensionless}+exp(-0.5143{per_mV}*(V_m-E_K+4.753{mV})));
    Ki_ss = a_Ki/(a_Ki+b_Ki);
    I_Ki = G_Ki_bar*sqrt(K_ext/5.4{unknown})*Ki_ss*(V_m-E_K);
  enddef;

  def comp Plateau_K_Current as
    var Kp: dimensionless;
    // isComputationalComponentFor: #property_91; physicalPropertyOf #process_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Plateau K+ current
    var I_Kp: uA_per_uF {pub: out};
    // isComputationalComponentFor: #property_92; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Sarcoplasm membrane potential
    var V_m: mV {pub: in};
    // isComputationalComponentFor: #property_93; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Potassium nernst potentials
    var E_K: mV {pub: in};
    var G_Kp: mS_per_uF {pub: in};
    Kp = 1{dimensionless}/(1{dimensionless}+exp((7.488{mV}-V_m)/5.98{mV}));
    I_Kp = G_Kp*Kp*(V_m-E_K);
  enddef;

  def comp Na_Ca_Exchanger_Current as
    var s4: dimensionless;
    var s5: dimensionless;
    // isComputationalComponentFor: #property_94; #process_4; #mediator_2; #entity_26; hasPhysicalDefinition http://purl.obolibrary.org/obo/PR_000015207; #sink_3; hasMultiplier 1.0; hasPhysicalEntityReference #entity_19; #sink_2; hasMultiplier 1.0; hasPhysicalEntityReference #entity_25; #source_3; hasMultiplier 1.0; hasPhysicalEntityReference #entity_17; #source_2; hasMultiplier 1.0; hasPhysicalEntityReference #entity_16; name Na+ - Ca2+ current exchanger across sarcolemma; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Na+ - Ca2+ current exchanger across sarcolemma
    var I_NCX: uA_per_uF {pub: out};
    var Na_ext: mM {pub: in};
    var Ca_ext: mM {pub: in};
    var k_NaCa: uA_per_uF {pub: in};
    var Km_Na: mM {pub: in};
    var Km_Ca: mM {pub: in};
    var k_sat: dimensionless {pub: in};
    var eta: dimensionless {pub: in};
    var FoRT: per_mV {pub: in};
    // isComputationalComponentFor: #property_95; #entity_14; #entity_1; hasPhysicalDefinition https://identifiers.org/cl/CL:2000046; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29101; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular sodium in the rat ventricular myocyte
    var Na_i: mM {pub: in};
    // isComputationalComponentFor: #property_96; physicalPropertyOf #entity_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular calcium in the rat ventricular myocyte
    var Ca_i: mM {pub: in};
    // isComputationalComponentFor: #property_97; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Sarcoplasm membrane potential
    var V_m: mV {pub: in};
    s4 = exp(eta*V_m*FoRT)*pow(Na_i, 3{dimensionless})*Ca_ext;
    s5 = exp((eta-1{unknown})*V_m*FoRT)*pow(Na_ext, 3{dimensionless})*Ca_i;
    I_NCX = k_NaCa/((pow(Km_Na, 3{dimensionless})+pow(Na_ext, 3{dimensionless}))*(Km_Ca+Ca_ext)*(1{dimensionless}+k_sat*exp((eta-1{unknown})*V_m*FoRT)))*(s4-s5);
  enddef;

  def comp Na_K_Pump_Current as
    var sigma: dimensionless;
    var f_NaK: dimensionless;
    // isComputationalComponentFor: #property_98; physicalPropertyOf #process_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Na+ - K+ pump current across sarcolemma
    var I_NaK: uA_per_uF {pub: out};
    var Na_ext: mM {pub: in};
    var K_ext: mM {pub: in};
    var I_bar_NaK: uA_per_uF {pub: in};
    var Km_Nai: mM {pub: in};
    var Km_Ko: mM {pub: in};
    var FoRT: per_mV {pub: in};
    // isComputationalComponentFor: #property_99; physicalPropertyOf #entity_14; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular sodium in the rat ventricular myocyte
    var Na_i: mM {pub: in};
    // isComputationalComponentFor: #property_100; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Sarcoplasm membrane potential
    var V_m: mV {pub: in};
    sigma = (exp(Na_ext/67.3{mM})-1{dimensionless})/7{dimensionless};
    f_NaK = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V_m*FoRT)+0.0365{dimensionless}*sigma*exp(-V_m*FoRT));
    I_NaK = I_bar_NaK*f_NaK/(1{dimensionless}+pow(Km_Nai/Na_i, 1.5{dimensionless}))*K_ext/(K_ext+Km_Ko);
  enddef;

  def comp Sarcolemmal_Ca_Pump_Current as
    // isComputationalComponentFor: #property_101; #process_6; #mediator_4; #entity_28; hasPhysicalDefinition http://identifiers.org/go/GO:0034704; #sink_6; hasMultiplier 1.0; #entity_25; #entity_18; hasPhysicalDefinition http://identifiers.org/fma/FMA:70022; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; #source_6; hasMultiplier 1.0; #entity_16; #entity_7; hasPhysicalDefinition http://identifiers.org/fma/FMA:226050; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; name Sarcolemmal Ca2+ pump current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Sarcolemmal Ca2+ pump current
    var I_PCa: uA_per_uF {pub: out};
    var I_bar_PCa: uA_per_uF {pub: in};
    var Km_PCa: mM {pub: in};
    // isComputationalComponentFor: #property_102; physicalPropertyOf #entity_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular calcium in the rat ventricular myocyte
    var Ca_i: mM {pub: in};
    I_PCa = I_bar_PCa*Ca_i/(Km_PCa+Ca_i);
  enddef;

  def comp Ca_Background_Current as
    // isComputationalComponentFor: #property_103; physicalPropertyOf #process_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Background Ca current
    var I_CaB: uA_per_uF {pub: out};
    // isComputationalComponentFor: #property_104; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Sarcoplasm membrane potential
    var V_m: mV {pub: in};
    // isComputationalComponentFor: #property_105; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Calcium Nernst potential
    var E_Ca: mV {pub: in};
    var G_CaB: uA_per_uF {pub: in};
    I_CaB = G_CaB*(V_m-E_Ca);
  enddef;

  def comp Na_Background_Current as
    // isComputationalComponentFor: #property_106; physicalPropertyOf #process_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Background Na+ current
    var I_NaB: uA_per_uF {pub: out};
    // isComputationalComponentFor: #property_107; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Sarcoplasm membrane potential
    var V_m: mV {pub: in};
    // isComputationalComponentFor: #property_108; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Sodium nernst potential
    var E_Na: mV {pub: in};
    var G_NaB: uA_per_uF {pub: in};
    I_NaB = G_NaB*(V_m-E_Na);
  enddef;

  def comp Total_Membrane_Currents as
    // isComputationalComponentFor: #property_109; physicalPropertyOf #process_9; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Total membrane Na+ current
    var I_Na_tot: uA_per_uF {pub: out};
    // isComputationalComponentFor: #property_110; physicalPropertyOf #process_10; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Total K+ current
    var I_K_tot: uA_per_uF {pub: out};
    // isComputationalComponentFor: #property_111; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    var I_Ca_tot: uA_per_uF {pub: out};
    // isComputationalComponentFor: #property_112; physicalPropertyOf #process_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Na+ flux across sarcolemma of rat ventricular myocyte
    var I_Na: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_113; #process_8; #mediator_6; #entity_29; hasPhysicalDefinition http://identifiers.org/go/GO:0034706; #sink_8; hasMultiplier 1.0; hasPhysicalEntityReference #entity_19; #source_8; hasMultiplier 1.0; hasPhysicalEntityReference #entity_17; name Background Na+ current flow; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Background Na+ current
    var I_NaB: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_114; physicalPropertyOf #process_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Na+ - Ca2+ current exchanger across sarcolemma
    var I_NCX: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_115; #process_5; #mediator_3; #entity_27; hasPhysicalDefinition http://identifiers.org/go/GO:0086037; #sink_5; hasMultiplier 1.0; hasPhysicalEntityReference #entity_17; #sink_4; hasMultiplier 1.0; hasPhysicalEntityReference #entity_22; #source_5; hasMultiplier 1.0; hasPhysicalEntityReference #entity_23; #source_4; hasMultiplier 1.0; hasPhysicalEntityReference #entity_19; name Na+ - K+ pump current across sarcolemma; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Na+ - K+ pump current across sarcolemma
    var I_NaK: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_116; physicalPropertyOf #process_1; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Transient Outward K+ current
    var I_to: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_117; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Subspace steady state current across sarcolemma
    var I_ss: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_118; #process_2; #mediator_1; #entity_24; hasPhysicalDefinition http://identifiers.org/go/GO:0034705; #sink_1; hasMultiplier 1.0; #entity_23; part_of #entity_18; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29103; #source_1; hasMultiplier 1.0; #entity_22; part_of #entity_7; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29103; name Time independent K current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Time independent K+ current across sarcolemma
    var I_Ki: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_119; #process_3; name Plateau K+ current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Plateau K+ current
    var I_Kp: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_120; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Potassium current through the channel
    var I_CaK: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_121; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: L-Type calcium current
    var I_Ca: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_122; #process_7; #mediator_5; hasPhysicalEntityReference #entity_28; #sink_7; hasMultiplier 1.0; hasPhysicalEntityReference #entity_16; #source_7; hasMultiplier 1.0; hasPhysicalEntityReference #entity_25; name Ca2+ ion flux into the rat ventricular myocyte; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Background Ca current
    var I_CaB: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_123; physicalPropertyOf #process_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Sarcolemmal Ca2+ pump current
    var I_PCa: uA_per_uF {pub: in};
    I_Na_tot = I_Na+I_NaB+3{dimensionless}*I_NCX+3{dimensionless}*I_NaK;
    I_K_tot = I_to+I_ss+I_Ki+I_Kp-2{dimensionless}*I_NaK+I_CaK;
    I_Ca_tot = I_Ca+I_CaB+I_PCa-2{dimensionless}*I_NCX;
  enddef;

  def comp Calcium_Induced_Calcium_Release as
    var t_rel: second;
    var ryr_on: dimensionless;
    var ryr_off: dimensionless;
    var g_rel: per_sec;
    // isComputationalComponentFor: #property_124; physicalPropertyOf #process_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: CICR release current
    var I_rel: mM_per_sec {pub: out};
    var tau_on: second {pub: in};
    var tau_off: second {pub: in};
    var G_max_rel: mM_per_sec {pub: in};
    // isComputationalComponentFor: #property_125; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    var I_Ca_tot: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_126; #entity_31; #entity_32; hasPhysicalDefinition http://identifiers.org/fma/FMA:62387; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of junctional SR Ca2+ ions
    var Ca_jsr: mM {pub: in};
    // isComputationalComponentFor: #property_127; physicalPropertyOf #entity_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular calcium in the rat ventricular myocyte
    var Ca_i: mM {pub: in};
    var trel: second {pub: in};
    t_rel = trel+2e-3{dimensionless};
    ryr_on = 1{dimensionless}-exp(-t_rel/tau_on);
    ryr_off = exp(-t_rel/tau_off);
    g_rel = G_max_rel/(1{dimensionless}+exp((I_Ca_tot+5{unknown})/0.9{unknown}));
    I_rel = g_rel*ryr_on*ryr_off*(Ca_jsr-Ca_i);
  enddef;

  def comp Other_SR_Fluxes_and_Concentrations as
    // isComputationalComponentFor: #property_128; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Km_up: mM;
    // isComputationalComponentFor: #property_129; physicalPropertyOf #process_12; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Ca2+ uptake into the NSR by the SR
    var I_up: mM_per_sec {pub: out};
    // isComputationalComponentFor: #property_130; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var I_leak: mM_per_sec {pub: out};
    // isComputationalComponentFor: #property_131; #process_13; #sink_10; hasMultiplier 1.0; hasPhysicalEntityReference #entity_37; #source_11; hasMultiplier 1.0; #entity_35; #entity_36; hasPhysicalDefinition http://identifiers.org/go/GO:0014701; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; name Ca2+ transfer from JSR to NSR; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Transfer flux of Ca2+ from the JSR to the NSR
    var I_tr: mM_per_sec;
    var B_jsr: dimensionless;
    // isComputationalComponentFor: #property_132; #entity_37; #entity_38; hasPhysicalDefinition http://identifiers.org/fma/FMA:62390; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Network SR Ca2+ concentration
    var Ca_nsr: mM {init: 1.92, pub: out};
    // isComputationalComponentFor: #property_133; physicalPropertyOf #entity_31; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of junctional SR Ca2+ ions
    var Ca_jsr: mM {init: 1.92, pub: out};
    // isComputationalComponentFor: #property_134; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var SR_content: uM;
    // is: https://identifiers.org/opb/OPB_01023
    var time: second {pub: in};
    var V_myo: uL {pub: in};
    var V_nsr: uL {pub: in};
    var V_jsr: uL {pub: in};
    var I_up_bar: mM_per_sec {pub: in};
    var Km_up0: mM {pub: in};
    var NSR_bar: mM {pub: in};
    var CSQN_bar: mM {pub: in};
    var Km_CSQN: mM {pub: in};
    var tau_tr: second {pub: in};
    var frac_PLB: dimensionless {pub: in};
    var frac_PLB_o: dimensionless {pub: in};
    // isComputationalComponentFor: #property_135; #process_11; #source_9; hasMultiplier 1.0; #entity_30; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; name CICR release current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: CICR release current
    var I_rel: mM_per_sec {pub: in};
    // isComputationalComponentFor: #property_136; physicalPropertyOf #entity_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular calcium in the rat ventricular myocyte
    var Ca_i: mM {pub: in};
    Km_up = Km_up0*(1{dimensionless}+2{dimensionless}*frac_PLB)/(1{dimensionless}+2{dimensionless}*frac_PLB_o);
    I_up = I_up_bar*sqr(Ca_i)/(sqr(Km_up)+sqr(Ca_i));
    I_leak = I_up_bar*Ca_nsr/NSR_bar;
    I_tr = (Ca_nsr-Ca_jsr)/tau_tr;
    B_jsr = 1{dimensionless}/(1{dimensionless}+CSQN_bar*Km_CSQN/sqr(Km_CSQN+Ca_jsr));
    ode(Ca_nsr, time) = I_up-I_leak-I_tr*V_jsr/V_nsr;
    ode(Ca_jsr, time) = B_jsr*(I_tr-I_rel);
    SR_content = 1e3{unknown}*((Ca_jsr+Ca_jsr/B_jsr)*V_jsr/V_myo+Ca_nsr*V_nsr/V_myo);
  enddef;

  def comp Cytoplasmic_Calcium_Buffering as
    var b_trpn: dimensionless;
    var b_cmdn: dimensionless;
    var b_indo: dimensionless;
    var B_myo: dimensionless {pub: out};
    var TRPN_bar: mM {pub: in};
    var CMDN_bar: mM {pub: in};
    var INDO_bar: mM {pub: in};
    var Km_TRPN: mM {pub: in};
    var Km_CMDN: mM {pub: in};
    var Km_INDO: mM {pub: in};
    // isComputationalComponentFor: #property_137; physicalPropertyOf #entity_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular calcium in the rat ventricular myocyte
    var Ca_i: mM {pub: in};
    b_trpn = TRPN_bar*Km_TRPN/sqr(Km_TRPN+Ca_i);
    b_cmdn = CMDN_bar*Km_CMDN/sqr(Km_CMDN+Ca_i);
    b_indo = INDO_bar*Km_INDO/sqr(Km_INDO+Ca_i);
    B_myo = 1{dimensionless}/(1{dimensionless}+b_cmdn+b_trpn+b_trpn+b_indo);
  enddef;

  def comp Ion_Concentrations_and_Membrane_Potential as
    // isComputationalComponentFor: #property_138; physicalPropertyOf #entity_14; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular sodium in the rat ventricular myocyte
    var Na_i: mM {init: 16, pub: out};
    // isComputationalComponentFor: #property_139; physicalPropertyOf #entity_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular potassium in the rat ventricular myocyte.
    var K_i: mM {init: 145, pub: out};
    // isComputationalComponentFor: #property_140; physicalPropertyOf #entity_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular calcium in the rat ventricular myocyte
    var Ca_i: mM {init: 1.58e-4, pub: out};
    // isComputationalComponentFor: #property_141; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    // description: Sarcoplasm membrane potential
    var V_m: mV {init: -85.66, pub: out};
    var trel: second {init: 0.9, pub: out};
    var I_app: uA_per_uF;
    // is: https://identifiers.org/opb/OPB_01023
    var time: second {pub: in};
    var V_myo: uL {pub: in};
    var V_nsr: uL {pub: in};
    var V_jsr: uL {pub: in};
    var A_Cap: cm2 {pub: in};
    var Frdy: coulombs_per_mole {pub: in};
    var z_Na: dimensionless {pub: in};
    var z_K: dimensionless {pub: in};
    var z_Ca: dimensionless {pub: in};
    // isComputationalComponentFor: #property_142; #process_9; name Total membrane Na+ current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Total membrane Na+ current
    var I_Na_tot: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_143; #process_10; name Total K+ current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Total K+ current
    var I_K_tot: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_144; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    var I_Ca_tot: uA_per_uF {pub: in};
    // isComputationalComponentFor: #property_145; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    var I_leak: mM_per_sec {pub: in};
    // isComputationalComponentFor: #property_146; physicalPropertyOf #process_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: CICR release current
    var I_rel: mM_per_sec {pub: in};
    // isComputationalComponentFor: #property_147; #process_12; #sink_9; hasMultiplier 1.0; #entity_33; #entity_34; name Network SR; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29108; #source_10; hasMultiplier 1.0; hasPhysicalEntityReference #entity_16; name Ca2+ uptake into the NSR by the SR; hasPhysicalDefinition https://identifiers.org/opb/OPB_00593
    // description: Ca2+ uptake into the NSR by the SR
    var I_up: mM_per_sec {pub: in};
    var B_myo: dimensionless {pub: in};
    var V_hold: mV {init: -40};
    var V_test: mV {init: -10};
    var V_clamp: mV;
    var R_clamp: dimensionless {init: 0.02};
    var protocol: dimensionless {pub: in};
    var I_pace: uA_per_uF {pub: in};
    V_clamp = sel
      case (time > 59.1{second}) and (time < 59.5{second}):
        V_test;
      otherwise:
        V_hold;
    endsel;
    I_app = sel
      case protocol == 0{dimensionless}:
        0{dimensionless};
      case protocol == 1{dimensionless}:
        I_pace;
      otherwise:
        (V_clamp-V_m)/0.02{dimensionless};
    endsel;
    ode(Na_i, time) = -1e3{dimensionless}*I_Na_tot*A_Cap/(V_myo*z_Na*Frdy);
    ode(K_i, time) = -1e3{dimensionless}*I_K_tot*A_Cap/(V_myo*z_K*Frdy);
    ode(Ca_i, time) = -B_myo*(1e3{dimensionless}*I_Ca_tot*A_Cap/(V_myo*z_Ca*Frdy)+(I_up-I_leak)*V_nsr/V_myo-I_rel*V_jsr/V_myo);
    ode(V_m, time) = -1e3{unknown}*(I_Ca_tot+I_K_tot+I_Na_tot-I_app);
    ode(trel, time) = sel
      case -1e3{unknown}*(I_Ca_tot+I_K_tot+I_Na_tot-I_app) > 30e3{mV_per_sec}:
        1{second}-1e4{dimensionless}*trel;
      otherwise:
        1{second};
    endsel;
  enddef;

  def comp Pacing as
    var I_pace: uA_per_uF {pub: out};
    // is: https://identifiers.org/opb/OPB_01023
    var time: second {pub: in};
    I_pace = sel
      case (time >= 0{second}) and (time <= 10{second}) and (time-0{second}-floor((time-0{second})/1{second})*1{second} <= 0.003{second}):
        10{uA_per_uF};
      otherwise:
        0{uA_per_uF};
    endsel;
  enddef;
  def map between EC_Coupling_Parameters and Time_Independent_K_Current for
    vars K_ext and K_ext;
    vars G_Ki_bar and G_Ki_bar;
  enddef;
  def map between EC_Coupling_Parameters and Other_SR_Fluxes_and_Concentrations for
    vars NSR_bar and NSR_bar;
    vars Km_up0 and Km_up0;
    vars Km_CSQN and Km_CSQN;
    vars CSQN_bar and CSQN_bar;
    vars V_jsr and V_jsr;
    vars tau_tr and tau_tr;
    vars V_myo and V_myo;
    vars V_nsr and V_nsr;
    vars I_up_bar and I_up_bar;
  enddef;
  def map between EC_Coupling_Parameters and Calcium_Induced_Calcium_Release for
    vars tau_on and tau_on;
    vars tau_off and tau_off;
    vars G_max_rel and G_max_rel;
  enddef;
  def map between Nernst_Potentials and Time_Independent_K_Current for
    vars E_K and E_K;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and Ca_Background_Current for
    vars V_m and V_m;
  enddef;
  def map between EC_Coupling_Parameters and Plateau_K_Current for
    vars G_Kp and G_Kp;
  enddef;
  def map between Total_Membrane_Currents and Calcium_Induced_Calcium_Release for
    vars I_Ca_tot and I_Ca_tot;
  enddef;
  def map between Nernst_Potentials and Ion_Concentrations_and_Membrane_Potential for
    vars z_Na and z_Na;
    vars z_K and z_K;
    vars Frdy and Frdy;
    vars z_Ca and z_Ca;
  enddef;
  def map between L_Type_Calcium_Current and Total_Membrane_Currents for
    vars I_Ca and I_Ca;
    vars I_CaK and I_CaK;
  enddef;
  def map between Nernst_Potentials and Plateau_K_Current for
    vars E_K and E_K;
  enddef;
  def map between EC_Coupling_Parameters and Nernst_Potentials for
    vars K_ext and K_ext;
    vars Temp and Temp;
    vars Na_ext and Na_ext;
    vars Ca_ext and Ca_ext;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and Sarcolemmal_Ca_Pump_Current for
    vars Ca_i and Ca_i;
  enddef;
  def map between PKA_parameters and PKA_module for
    vars PKI_tot and PKI_tot;
    vars K_b and K_b;
    vars K_d and K_d;
    vars PKAII_tot and PKAII_tot;
    vars K_a and K_a;
    vars Ki_pki and Ki_pki;
    vars PKAI_tot and PKAI_tot;
  enddef;
  def map between EC_Coupling_Parameters and Cytoplasmic_Calcium_Buffering for
    vars TRPN_bar and TRPN_bar;
    vars INDO_bar and INDO_bar;
    vars Km_TRPN and Km_TRPN;
    vars Km_CMDN and Km_CMDN;
    vars CMDN_bar and CMDN_bar;
    vars Km_INDO and Km_INDO;
  enddef;
  def map between Na_K_Pump_Current and Total_Membrane_Currents for
    vars I_NaK and I_NaK;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and Cytoplasmic_Calcium_Buffering for
    vars Ca_i and Ca_i;
  enddef;
  def map between Nernst_Potentials and L_Type_Calcium_Current for
    vars FoRT and FoRT;
    vars Frdy and Frdy;
  enddef;
  def map between EC_Coupling_Parameters and Na_K_Pump_Current for
    vars K_ext and K_ext;
    vars Km_Nai and Km_Nai;
    vars I_bar_NaK and I_bar_NaK;
    vars Na_ext and Na_ext;
    vars Km_Ko and Km_Ko;
  enddef;
  def map between Other_SR_Fluxes_and_Concentrations and Calcium_Induced_Calcium_Release for
    vars Ca_jsr and Ca_jsr;
  enddef;
  def map between environment and PLB_module for
    vars time and time;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and Calcium_Induced_Calcium_Release for
    vars trel and trel;
    vars Ca_i and Ca_i;
  enddef;
  def map between Sarcolemmal_Ca_Pump_Current and Total_Membrane_Currents for
    vars I_PCa and I_PCa;
  enddef;
  def map between cAMP_module and PKA_module for
    vars cAMP_tot and cAMP_tot;
  enddef;
  def map between PKA_module and LCC_module for
    vars PKAC_II and PKAC_II;
  enddef;
  def map between environment and Transient_Outward_K_Current for
    vars time and time;
  enddef;
  def map between Total_Membrane_Currents and Ion_Concentrations_and_Membrane_Potential for
    vars I_Ca_tot and I_Ca_tot;
    vars I_K_tot and I_K_tot;
    vars I_Na_tot and I_Na_tot;
  enddef;
  def map between EC_Coupling_Parameters and L_Type_Calcium_Current for
    vars I_Ca05 and I_Ca05;
    vars f and f;
    vars K_ext and K_ext;
    vars N_lcc and N_lcc;
    vars p_K and p_K;
    vars g and g;
    vars gamma_o and gamma_o;
    vars omega and omega;
    vars p_Ca and p_Ca;
    vars Ca_ext and Ca_ext;
  enddef;
  def map between EC_Coupling_Parameters and Na_Background_Current for
    vars G_NaB and G_NaB;
  enddef;
  def map between Ca_Background_Current and Total_Membrane_Currents for
    vars I_CaB and I_CaB;
  enddef;
  def map between PKA_module and cAMP_module for
    vars cAMP and cAMP;
  enddef;
  def map between Nernst_Potentials and Transient_Outward_K_Current for
    vars E_K and E_K;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and Other_SR_Fluxes_and_Concentrations for
    vars Ca_i and Ca_i;
  enddef;
  def map between EC_Coupling_Parameters and Transient_Outward_K_Current for
    vars G_to and G_to;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and Time_Independent_K_Current for
    vars V_m and V_m;
  enddef;
  def map between EC_Coupling_Parameters and Fast_Na_Current for
    vars G_Na and G_Na;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and Transient_Outward_K_Current for
    vars V_m and V_m;
  enddef;
  def map between PLB_module and Other_SR_Fluxes_and_Concentrations for
    vars frac_PLB_o and frac_PLB_o;
    vars frac_PLB and frac_PLB;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and Plateau_K_Current for
    vars V_m and V_m;
  enddef;
  def map between EC_Coupling_Parameters and Sarcolemmal_Ca_Pump_Current for
    vars I_bar_PCa and I_bar_PCa;
    vars Km_PCa and Km_PCa;
  enddef;
  def map between b1_AR_Gs_parameters and b1_AR_module for
    vars k_p_kap and k_p_kap;
    vars k_bar_km and k_bar_km;
    vars k_g_act and k_g_act;
    vars k_hyd and k_hyd;
    vars Kl and Kl;
    vars k_bar_kp and k_bar_kp;
    vars k_p_kam and k_p_kam;
    vars Gs_tot and Gs_tot;
    vars Kr and Kr;
    vars k_reassoc and k_reassoc;
    vars L_totmax and L_totmax;
    vars sum_b1_AR and sum_b1_AR;
    vars Kc and Kc;
  enddef;
  def map between Nernst_Potentials and Steady_State_K_Current for
    vars E_K and E_K;
  enddef;
  def map between environment and LCC_module for
    vars time and time;
  enddef;
  def map between Nernst_Potentials and Na_Ca_Exchanger_Current for
    vars FoRT and FoRT;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and Nernst_Potentials for
    vars K_i and K_i;
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
  enddef;
  def map between Transient_Outward_K_Current and Total_Membrane_Currents for
    vars I_to and I_to;
  enddef;
  def map between environment and Pacing for
    vars time and time;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and Na_Background_Current for
    vars V_m and V_m;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and Na_K_Pump_Current for
    vars Na_i and Na_i;
    vars V_m and V_m;
  enddef;
  def map between Nernst_Potentials and Fast_Na_Current for
    vars E_Na and E_Na;
  enddef;
  def map between Cytoplasmic_Calcium_Buffering and Ion_Concentrations_and_Membrane_Potential for
    vars B_myo and B_myo;
  enddef;
  def map between environment and cAMP_module for
    vars time and time;
  enddef;
  def map between environment and b1_AR_module for
    vars time and time;
  enddef;
  def map between Pacing and Ion_Concentrations_and_Membrane_Potential for
    vars I_pace and I_pace;
  enddef;
  def map between EC_Coupling_Parameters and Na_Ca_Exchanger_Current for
    vars k_NaCa and k_NaCa;
    vars Km_Ca and Km_Ca;
    vars Km_Na and Km_Na;
    vars k_sat and k_sat;
    vars Na_ext and Na_ext;
    vars Ca_ext and Ca_ext;
    vars eta and eta;
  enddef;
  def map between Na_Ca_Exchanger_Current and Total_Membrane_Currents for
    vars I_NCX and I_NCX;
  enddef;
  def map between Fast_Na_Current and Total_Membrane_Currents for
    vars I_Na and I_Na;
  enddef;
  def map between EC_Coupling_Parameters and Steady_State_K_Current for
    vars G_ss and G_ss;
  enddef;
  def map between Calcium_Induced_Calcium_Release and Ion_Concentrations_and_Membrane_Potential for
    vars I_rel and I_rel;
  enddef;
  def map between LCC_module and L_Type_Calcium_Current for
    vars frac_LCCa_p and frac_LCCa_p;
    vars frac_LCCb_po and frac_LCCb_po;
    vars frac_LCCa_po and frac_LCCa_po;
    vars frac_LCCb_p and frac_LCCb_p;
  enddef;
  def map between EC_Coupling_Parameters and Ion_Concentrations_and_Membrane_Potential for
    vars V_jsr and V_jsr;
    vars A_Cap and A_Cap;
    vars V_myo and V_myo;
    vars V_nsr and V_nsr;
  enddef;
  def map between EC_Coupling_Parameters and Ca_Background_Current for
    vars G_CaB and G_CaB;
  enddef;
  def map between b1_AR_module and cAMP_module for
    vars Gs_agtp_tot and Gs_agtp_tot;
  enddef;
  def map between Na_Background_Current and Total_Membrane_Currents for
    vars I_NaB and I_NaB;
  enddef;
  def map between Calcium_Induced_Calcium_Release and Other_SR_Fluxes_and_Concentrations for
    vars I_rel and I_rel;
  enddef;
  def map between environment and Ion_Concentrations_and_Membrane_Potential for
    vars protocol and protocol;
    vars time and time;
  enddef;
  def map between Nernst_Potentials and Na_K_Pump_Current for
    vars FoRT and FoRT;
  enddef;
  def map between Plateau_K_Current and Total_Membrane_Currents for
    vars I_Kp and I_Kp;
  enddef;
  def map between Nernst_Potentials and Na_Background_Current for
    vars E_Na and E_Na;
  enddef;
  def map between PKA_module and PLB_module for
    vars PKAC_I and PKAC_I;
  enddef;
  def map between Other_SR_Fluxes_and_Concentrations and Ion_Concentrations_and_Membrane_Potential for
    vars I_leak and I_leak;
    vars I_up and I_up;
  enddef;
  def map between PLB_parameters and PLB_module for
    vars Inhib1_tot and Inhib1_tot;
    vars Vmax_pp2a_i1 and Vmax_pp2a_i1;
    vars PP1_tot and PP1_tot;
    vars Ki_inhib1 and Ki_inhib1;
    vars Km_pka_plb and Km_pka_plb;
    vars k_pka_i1 and k_pka_i1;
    vars Km_pka_i1 and Km_pka_i1;
    vars Km_pp2a_i1 and Km_pp2a_i1;
    vars k_pka_plb and k_pka_plb;
    vars PLB_tot and PLB_tot;
    vars Km_pp1_plb and Km_pp1_plb;
    vars k_pp1_plb and k_pp1_plb;
  enddef;
  def map between Time_Independent_K_Current and Total_Membrane_Currents for
    vars I_Ki and I_Ki;
  enddef;
  def map between Nernst_Potentials and Ca_Background_Current for
    vars E_Ca and E_Ca;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and Steady_State_K_Current for
    vars V_m and V_m;
  enddef;
  def map between environment and Other_SR_Fluxes_and_Concentrations for
    vars time and time;
  enddef;
  def map between environment and L_Type_Calcium_Current for
    vars time and time;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and Na_Ca_Exchanger_Current for
    vars Na_i and Na_i;
    vars V_m and V_m;
    vars Ca_i and Ca_i;
  enddef;
  def map between environment and Steady_State_K_Current for
    vars time and time;
  enddef;
  def map between LCC_parameters and LCC_module for
    vars k_pka_lcc and k_pka_lcc;
    vars k_pp2a_lcc and k_pp2a_lcc;
    vars Km_pka_lcc and Km_pka_lcc;
    vars LCC_tot and LCC_tot;
    vars PP1_lcc_tot and PP1_lcc_tot;
    vars Km_pp1_lcc and Km_pp1_lcc;
    vars epsilon and epsilon;
    vars PP2A_lcc_tot and PP2A_lcc_tot;
    vars k_pp1_lcc and k_pp1_lcc;
    vars Km_pp2a_lcc and Km_pp2a_lcc;
  enddef;
  def map between PKA_module and b1_AR_module for
    vars PKAC_I and PKAC_I;
  enddef;
  def map between Steady_State_K_Current and Total_Membrane_Currents for
    vars I_ss and I_ss;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and Fast_Na_Current for
    vars V_m and V_m;
  enddef;
  def map between cAMP_parameters and cAMP_module for
    vars K_fsk and K_fsk;
    vars Km_pde and Km_pde;
    vars AC_tot and AC_tot;
    vars K_gsa and K_gsa;
    vars IBMX_tot and IBMX_tot;
    vars Fsk_tot and Fsk_tot;
    vars k_ac_basal and k_ac_basal;
    vars k_pde and k_pde;
    vars Ki_ibmx and Ki_ibmx;
    vars Km_fsk and Km_fsk;
    vars k_ac_fsk and k_ac_fsk;
    vars k_ac_gsa and k_ac_gsa;
    vars ATP and ATP;
    vars Km_gsa and Km_gsa;
    vars PDE_tot and PDE_tot;
    vars Km_basal and Km_basal;
  enddef;
  def map between environment and Fast_Na_Current for
    vars time and time;
  enddef;
  def map between Ion_Concentrations_and_Membrane_Potential and L_Type_Calcium_Current for
    vars K_i and K_i;
    vars V_m and V_m;
    vars Ca_i and Ca_i;
  enddef;
enddef;
