<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:xlink="http://www.w3.org/1999/xlink" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:semsim="http://www.bhi.washington.edu/SemSim#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="mitochondrial_model_1992" cmeta:id="mitochondrial_model_1992">
  <documentation xmlns="http://cellml.org/tmp-documentation">
    <article>
      <articleinfo>
        <title>IP3-Mediated Ca2+ Release</title>
        <author>
          <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
          <affiliation>
            <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
          </affiliation>
        </author>
      </articleinfo>
      <sect1 id="sec_structure">
        <title>Model Structure</title>
        <para>
          Ca
          <superscript>2+</superscript>
          is a ubiquitous intracellular secondary messenger, and evidence from several different cell types suggests that an important mode of signalling is through oscillations rather than the maintenance of a steady state level.  The oscillatory behaviour of inositol 1,4,5-triphosphate (IP3)-mediated Ca
          <superscript>2+</superscript>
          release has been modelled by Gary W. De Young and Joel Keizer.  Their 1992 paper is referenced fully below.
        </para>
        <para>
          <ulink url="http://www.pnas.org/cgi/content/abstract/89/20/9895">
            A single-pool inositol 1,4,5-triphosphate-receptor-based model for agonist-stimulated oscillations in Ca
            <superscript>2+</superscript>
            concentration
          </ulink>
          , Gary W. De Young and Joel Keizer, 1992,
          <ulink url="http://www.pnas.org/">
            <emphasis>Proc. Natl. Acad. Sci. USA</emphasis>
          </ulink>
          , 89, 9895-9899. (A
          <ulink url="http://www.pnas.org/cgi/reprint/89/20/9895.pdf">PDF</ulink>
          of the article is available to subscribers on the PNAS website.)
          <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=1329108&amp;dopt=Abstract">PubMed ID: 1329108</ulink>
        </para>
        <para>
          Several mechanisms have been proposed to explain oscillations of intracellular Ca
          <superscript>2+</superscript>
          concentration in cells.  In this study, De Young and Keizer investigate the idea that a biphasic response of the IP3 receptor/channel to cytosolic Ca
          <superscript>2+</superscript>
          may alone be sufficient to induce Ca
          <superscript>2+</superscript>
          oscillations.
        </para>
        <para>
          They constructed a simplified model of the IP3 receptor/channel by assuming that three equivalent and independent subunits are involved in Ca
          <superscript>2+</superscript>
          conduction.  Each subunit has three binding sites: one for IP3, one for Ca
          <superscript>2+</superscript>
          activation, and one for Ca
          <superscript>2+</superscript>
          inactivation.  Thus each subunit may exist in eight states with transitions governed by second-order (association) and first-order (dissociation) rate constants (see
          <xref linkend="fig_pathway_diagram" />
          below).  All three subunits must be in the state S
          <subscript>110</subscript>
          (one IP3 and one activating Ca
          <superscript>2+</superscript>
          bound) for the channel to be open and conducting.
        </para>
        <para>
          The raw CellML description of the IP3-mediated Ca
          <superscript>2+</superscript>
          release model can be downloaded in various formats as described in
          <xref linkend="sec_download_this_model" />
          .
        </para>
        <informalfigure float="0" id="fig_pathway_diagram">
          <mediaobject>
            <imageobject>
              <objectinfo>
                <title>A schematic diagram of the kinetics of an IP3 receptor/channel subunit</title>
              </objectinfo>
              <imagedata fileref="deyoung_1992.png" />
            </imageobject>
          </mediaobject>
          <caption>
            A schematic diagram of the kinetics of an IP
            <subscript>3</subscript>
            receptor/channel subunit.
          </caption>
        </informalfigure>
      </sect1>
    </article>
  </documentation>
  <units name="micromolar">
    <unit prefix="micro" units="mole" />
    <unit exponent="-1.0" units="litre" />
  </units>
  <units name="flux">
    <unit units="micromolar" />
    <unit exponent="-1.0" units="second" />
  </units>
  <units name="first_order_rate_constant">
    <unit exponent="-1.0" units="second" />
  </units>
  <units name="nanomolar">
    <unit prefix="nano" units="mole" />
    <unit exponent="-1.0" units="litre" />
  </units>
  <units name="second_order_rate_constant">
    <unit exponent="-1.0" units="micromolar" />
    <unit exponent="-1.0" units="second" />
  </units>
  <component name="x_010">
    <variable cmeta:id="x_010.V3" name="V3" public_interface="in" units="flux" />
    <variable cmeta:id="x_010.x_010" name="x_010" public_interface="out" units="micromolar" />
    <variable cmeta:id="x_010.V2" name="V2" public_interface="in" units="flux" />
    <variable cmeta:id="x_010.time" name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="9" cmeta:id="9">
      <apply id="x_010_diff_eq">
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>x_010</ci>
        </apply>
        <apply>
          <minus />
          <ci>V3</ci>
          <ci>V2</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Ca_i">
    <variable cmeta:id="Ca_i.v2" name="v2" units="first_order_rate_constant" />
    <variable cmeta:id="Ca_i.v1" name="v1" units="first_order_rate_constant" />
    <variable cmeta:id="Ca_i.Ca_i" name="Ca_i" public_interface="out" units="micromolar" />
    <variable cmeta:id="Ca_i.time" name="time" public_interface="in" units="second" />
    <variable cmeta:id="Ca_i.c1" name="c1" public_interface="in" units="dimensionless" />
    <variable cmeta:id="Ca_i.v3" name="v3" units="second_order_rate_constant" />
    <variable cmeta:id="Ca_i.J2" name="J2" units="flux" />
    <variable cmeta:id="Ca_i.k3" name="k3" units="micromolar" />
    <variable cmeta:id="Ca_i.J1" name="J1" units="flux" />
    <variable cmeta:id="Ca_i.Ca_ER" name="Ca_ER" public_interface="in" units="micromolar" />
    <variable cmeta:id="Ca_i.P_open" name="P_open" public_interface="in" units="dimensionless" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="1" cmeta:id="1">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Ca_i</ci>
        </apply>
        <apply>
          <minus />
          <ci>J1</ci>
          <ci>J2</ci>
        </apply>
      </apply>
      <apply id="J1_calculation">
        <eq />
        <ci>J1</ci>
        <apply>
          <times />
          <ci>c1</ci>
          <apply>
            <plus />
            <apply>
              <times />
              <ci>v1</ci>
              <ci>P_open</ci>
            </apply>
            <ci>v2</ci>
          </apply>
          <apply>
            <minus />
            <ci>Ca_ER</ci>
            <ci>Ca_i</ci>
          </apply>
        </apply>
      </apply>
      <apply id="J2_calculation">
        <eq />
        <ci>J2</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>v3</ci>
            <apply>
              <power />
              <ci>Ca_i</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2.0</cn>
            </apply>
          </apply>
          <apply>
            <plus />
            <apply>
              <power />
              <ci>Ca_i</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2.0</cn>
            </apply>
            <apply>
              <power />
              <ci>k3</ci>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">2.0</cn>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="x_001">
    <variable cmeta:id="x_001.x_001" name="x_001" public_interface="out" units="micromolar" />
    <variable cmeta:id="x_001.V4" name="V4" public_interface="in" units="flux" />
    <variable cmeta:id="x_001.time" name="time" public_interface="in" units="second" />
    <variable cmeta:id="x_001.V1" name="V1" public_interface="in" units="flux" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="8" cmeta:id="8">
      <apply id="x_001_diff_eq">
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>x_001</ci>
        </apply>
        <apply>
          <minus />
          <ci>V1</ci>
          <ci>V4</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="x_000">
    <variable cmeta:id="x_000.time" name="time" public_interface="in" units="second" />
    <variable cmeta:id="x_000.x_000" name="x_000" public_interface="out" units="micromolar" />
    <variable cmeta:id="x_000.V3" name="V3" public_interface="in" units="flux" />
    <variable cmeta:id="x_000.V1" name="V1" public_interface="in" units="flux" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="7" cmeta:id="7">
      <apply id="x_000_diff_eq">
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>x_000</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <minus />
            <ci>V1</ci>
          </apply>
          <ci>V3</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="x_011">
    <variable cmeta:id="x_011.x_010" name="x_010" public_interface="in" units="micromolar" />
    <variable cmeta:id="x_011.x_000" name="x_000" public_interface="in" units="micromolar" />
    <variable cmeta:id="x_011.x_011" name="x_011" public_interface="out" units="micromolar" />
    <variable cmeta:id="x_011.x_001" name="x_001" public_interface="in" units="micromolar" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="8a" cmeta:id="8a">
      <apply id="x_011_eq">
        <eq />
        <ci>x_011</ci>
        <apply>
          <minus />
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1.0</cn>
          <apply>
            <plus />
            <ci>x_000</ci>
            <ci>x_001</ci>
            <ci>x_010</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="receptor_dissociation_constants">
    <variable cmeta:id="receptor_dissociation_constants.a5" name="a5" public_interface="in" units="second_order_rate_constant" />
    <variable cmeta:id="receptor_dissociation_constants.a4" name="a4" public_interface="in" units="second_order_rate_constant" />
    <variable cmeta:id="receptor_dissociation_constants.b5" name="b5" public_interface="in" units="first_order_rate_constant" />
    <variable cmeta:id="receptor_dissociation_constants.IP3_cold" name="IP3_cold" units="nanomolar" />
    <variable cmeta:id="receptor_dissociation_constants.a3" name="a3" public_interface="in" units="second_order_rate_constant" />
    <variable cmeta:id="receptor_dissociation_constants.b4" name="b4" public_interface="in" units="first_order_rate_constant" />
    <variable cmeta:id="receptor_dissociation_constants.a2" name="a2" public_interface="in" units="second_order_rate_constant" />
    <variable cmeta:id="receptor_dissociation_constants.b3" name="b3" public_interface="in" units="first_order_rate_constant" />
    <variable cmeta:id="receptor_dissociation_constants.d5" name="d5" public_interface="out" units="nanomolar" />
    <variable cmeta:id="receptor_dissociation_constants.b2" name="b2" public_interface="in" units="first_order_rate_constant" />
    <variable cmeta:id="receptor_dissociation_constants.d4" name="d4" public_interface="out" units="nanomolar" />
    <variable cmeta:id="receptor_dissociation_constants.d3" name="d3" public_interface="out" units="nanomolar" />
    <variable cmeta:id="receptor_dissociation_constants.K_d1" name="K_d1" units="nanomolar" />
    <variable cmeta:id="receptor_dissociation_constants.d2" name="d2" public_interface="out" units="micromolar" />
    <variable cmeta:id="receptor_dissociation_constants.K_d2" name="K_d2" units="nanomolar" />
    <variable cmeta:id="receptor_dissociation_constants.d1" name="d1" public_interface="out" units="micromolar" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="5" cmeta:id="5">
      <apply id="d1_calculation">
        <eq />
        <ci>d1</ci>
        <apply>
          <minus />
          <ci>K_d1</ci>
          <ci>IP3_cold</ci>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="5A">
      <apply id="d2_calculation">
        <eq />
        <ci>d2</ci>
        <apply>
          <divide />
          <ci>b2</ci>
          <ci>a2</ci>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="5B">
      <apply id="d3_calculation">
        <eq />
        <ci>d3</ci>
        <apply>
          <minus />
          <apply>
            <times />
            <apply>
              <minus />
              <ci>K_d2</ci>
              <ci>IP3_cold</ci>
            </apply>
            <apply>
              <plus />
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1</cn>
              <ci>d2</ci>
            </apply>
          </apply>
          <apply>
            <times />
            <ci>d1</ci>
            <ci>d2</ci>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="5C">
      <apply id="d4_calculation">
        <eq />
        <ci>d4</ci>
        <apply>
          <divide />
          <apply>
            <times />
            <ci>d1</ci>
            <ci>d2</ci>
          </apply>
          <ci>d3</ci>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="5D">
      <apply id="d5_calculation">
        <eq />
        <ci>d5</ci>
        <apply>
          <divide />
          <ci>b5</ci>
          <ci>a5</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="IP3">
    <variable cmeta:id="IP3.Ca_i" name="Ca_i" public_interface="in" units="micromolar" />
    <variable cmeta:id="IP3.IP3" name="IP3" public_interface="out" units="micromolar" />
    <variable cmeta:id="IP3.v4" name="v4" units="first_order_rate_constant" />
    <variable cmeta:id="IP3.alpha" name="alpha" units="dimensionless" />
    <variable cmeta:id="IP3.Ir" name="Ir" units="flux" />
    <variable cmeta:id="IP3.k4" name="k4" units="micromolar" />
    <variable cmeta:id="IP3.time" name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="3" cmeta:id="3">
      <apply>
        <eq />
        <apply>
          <diff />
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>IP3</ci>
        </apply>
        <apply>
          <minus />
          <apply>
            <times />
            <ci>v4</ci>
            <apply>
              <divide />
              <apply>
                <plus />
                <ci>Ca_i</ci>
                <apply>
                  <times />
                  <apply>
                    <minus />
                    <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">1.0</cn>
                    <ci>alpha</ci>
                  </apply>
                  <ci>k4</ci>
                </apply>
              </apply>
              <apply>
                <plus />
                <ci>Ca_i</ci>
                <ci>k4</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <times />
            <ci>Ir</ci>
            <ci>IP3</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="environment">
    <variable cmeta:id="environment.time" name="time" public_interface="out" units="second" />
  </component>
  <component name="fluxes">
    <variable cmeta:id="fluxes.V1" name="V1" public_interface="out" units="flux" />
    <variable cmeta:id="fluxes.V3" name="V3" public_interface="out" units="flux" />
    <variable cmeta:id="fluxes.V2" name="V2" public_interface="out" units="flux" />
    <variable cmeta:id="fluxes.V4" name="V4" public_interface="out" units="flux" />
    <variable cmeta:id="fluxes.d5" name="d5" public_interface="in" units="nanomolar" />
    <variable cmeta:id="fluxes.d4" name="d4" public_interface="in" units="nanomolar" />
    <variable cmeta:id="fluxes.a4" name="a4" public_interface="in" units="second_order_rate_constant" />
    <variable cmeta:id="fluxes.a5" name="a5" public_interface="in" units="second_order_rate_constant" />
    <variable cmeta:id="fluxes.x_001" name="x_001" public_interface="in" units="micromolar" />
    <variable cmeta:id="fluxes.x_000" name="x_000" public_interface="in" units="micromolar" />
    <variable cmeta:id="fluxes.x_011" name="x_011" public_interface="in" units="micromolar" />
    <variable cmeta:id="fluxes.Ca_i" name="Ca_i" public_interface="in" units="micromolar" />
    <variable cmeta:id="fluxes.x_010" name="x_010" public_interface="in" units="micromolar" />
    <variable cmeta:id="fluxes.time" name="time" public_interface="in" units="second" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="10" cmeta:id="10">
      <apply id="V1_calculation">
        <eq />
        <ci>V1</ci>
        <apply>
          <times />
          <ci>a4</ci>
          <apply>
            <minus />
            <apply>
              <times />
              <ci>Ca_i</ci>
              <ci>x_000</ci>
            </apply>
            <apply>
              <times />
              <ci>d4</ci>
              <ci>x_001</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply id="V2_calculation">
        <eq />
        <ci>V2</ci>
        <apply>
          <times />
          <ci>a4</ci>
          <apply>
            <minus />
            <apply>
              <times />
              <ci>Ca_i</ci>
              <ci>x_010</ci>
            </apply>
            <apply>
              <times />
              <ci>d4</ci>
              <ci>x_011</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply id="V3_calculation">
        <eq />
        <ci>V3</ci>
        <apply>
          <times />
          <ci>a5</ci>
          <apply>
            <minus />
            <apply>
              <times />
              <ci>Ca_i</ci>
              <ci>x_000</ci>
            </apply>
            <apply>
              <times />
              <ci>d5</ci>
              <ci>x_010</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply id="V4_calculation">
        <eq />
        <ci>V4</ci>
        <apply>
          <times />
          <ci>a5</ci>
          <apply>
            <minus />
            <apply>
              <times />
              <ci>Ca_i</ci>
              <ci>x_001</ci>
            </apply>
            <apply>
              <times />
              <ci>d5</ci>
              <ci>x_011</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="probability_of_an_open_IP3_receptor_channel">
    <variable cmeta:id="probability_of_an_open_IP3_receptor_channel.d2" name="d2" public_interface="in" units="micromolar" />
    <variable cmeta:id="probability_of_an_open_IP3_receptor_channel.Ca_i" name="Ca_i" public_interface="in" units="micromolar" />
    <variable cmeta:id="probability_of_an_open_IP3_receptor_channel.IP3" name="IP3" public_interface="in" units="micromolar" />
    <variable cmeta:id="probability_of_an_open_IP3_receptor_channel.d1" name="d1" public_interface="in" units="micromolar" />
    <variable cmeta:id="probability_of_an_open_IP3_receptor_channel.P_open" name="P_open" public_interface="out" units="dimensionless" />
    <variable cmeta:id="probability_of_an_open_IP3_receptor_channel.d5" name="d5" public_interface="in" units="nanomolar" />
    <variable cmeta:id="probability_of_an_open_IP3_receptor_channel.d3" name="d3" public_interface="in" units="nanomolar" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="6" cmeta:id="6">
      <apply id="P_open_calculation">
        <eq />
        <ci>P_open</ci>
        <apply>
          <power />
          <apply>
            <divide />
            <apply>
              <times />
              <ci>Ca_i</ci>
              <ci>IP3</ci>
              <ci>d2</ci>
            </apply>
            <apply>
              <times />
              <apply>
                <plus />
                <apply>
                  <times />
                  <ci>Ca_i</ci>
                  <ci>IP3</ci>
                </apply>
                <apply>
                  <times />
                  <ci>IP3</ci>
                  <ci>d2</ci>
                </apply>
                <apply>
                  <times />
                  <ci>d1</ci>
                  <ci>d2</ci>
                </apply>
                <apply>
                  <times />
                  <ci>Ca_i</ci>
                  <ci>d3</ci>
                </apply>
              </apply>
              <apply>
                <plus />
                <ci>Ca_i</ci>
                <ci>d5</ci>
              </apply>
            </apply>
          </apply>
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless">3.0</cn>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Ca_ER">
    <variable cmeta:id="Ca_ER.c1" name="c1" public_interface="in" units="dimensionless" />
    <variable cmeta:id="Ca_ER.Ca_ER" name="Ca_ER" public_interface="out" units="micromolar" />
    <variable cmeta:id="Ca_ER.c0" name="c0" units="micromolar" />
    <variable cmeta:id="Ca_ER.time" name="time" public_interface="in" units="second" />
    <variable cmeta:id="Ca_ER.Ca_i" name="Ca_i" public_interface="in" units="micromolar" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="2" cmeta:id="2">
      <apply id="Ca_ER_calculation">
        <eq />
        <ci>Ca_ER</ci>
        <apply>
          <divide />
          <apply>
            <minus />
            <ci>c0</ci>
            <ci>Ca_i</ci>
          </apply>
          <ci>c1</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="constants">
    <variable cmeta:id="constants.a3" name="a3" public_interface="out" units="second_order_rate_constant" />
    <variable cmeta:id="constants.b4" name="b4" public_interface="out" units="first_order_rate_constant" />
    <variable cmeta:id="constants.a4" name="a4" public_interface="out" units="second_order_rate_constant" />
    <variable cmeta:id="constants.b5" name="b5" public_interface="out" units="first_order_rate_constant" />
    <variable cmeta:id="constants.a5" name="a5" public_interface="out" units="second_order_rate_constant" />
    <variable cmeta:id="constants.d1" name="d1" public_interface="in" units="micromolar" />
    <variable cmeta:id="constants.c1" name="c1" public_interface="out" units="dimensionless" />
    <variable cmeta:id="constants.b1" name="b1" public_interface="out" units="first_order_rate_constant" />
    <variable cmeta:id="constants.d3" name="d3" public_interface="in" units="nanomolar" />
    <variable cmeta:id="constants.a1" name="a1" public_interface="out" units="second_order_rate_constant" />
    <variable cmeta:id="constants.b2" name="b2" public_interface="out" units="first_order_rate_constant" />
    <variable cmeta:id="constants.d4" name="d4" public_interface="in" units="nanomolar" />
    <variable cmeta:id="constants.a2" name="a2" public_interface="out" units="second_order_rate_constant" />
    <variable cmeta:id="constants.b3" name="b3" public_interface="out" units="first_order_rate_constant" />
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="11" cmeta:id="11">
      <apply id="b1_calculation">
        <eq />
        <ci>b1</ci>
        <apply>
          <times />
          <ci>d1</ci>
          <ci>a1</ci>
        </apply>
      </apply>
      <apply id="b3_calculation">
        <eq />
        <ci>b3</ci>
        <apply>
          <times />
          <ci>d3</ci>
          <ci>a3</ci>
        </apply>
      </apply>
      <apply id="b4_calculation">
        <eq />
        <ci>b4</ci>
        <apply>
          <times />
          <ci>d4</ci>
          <ci>a4</ci>
        </apply>
      </apply>
    </math>
  </component>
  <connection>
    <map_components component_1="environment" component_2="x_000" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="IP3" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="x_001" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="fluxes" component_2="x_000" />
    <map_variables variable_1="V3" variable_2="V3" />
    <map_variables variable_1="V1" variable_2="V1" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="Ca_ER" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="Ca_i" component_2="Ca_ER" />
    <map_variables variable_1="Ca_i" variable_2="Ca_i" />
  </connection>
  <connection>
    <map_components component_1="constants" component_2="fluxes" />
    <map_variables variable_1="a5" variable_2="a5" />
    <map_variables variable_1="a4" variable_2="a4" />
  </connection>
  <connection>
    <map_components component_1="x_000" component_2="x_011" />
    <map_variables variable_1="x_000" variable_2="x_000" />
  </connection>
  <connection>
    <map_components component_1="x_010" component_2="fluxes" />
    <map_variables variable_1="x_010" variable_2="x_010" />
  </connection>
  <connection>
    <map_components component_1="IP3" component_2="probability_of_an_open_IP3_receptor_channel" />
    <map_variables variable_1="IP3" variable_2="IP3" />
  </connection>
  <connection>
    <map_components component_1="constants" component_2="Ca_i" />
    <map_variables variable_1="c1" variable_2="c1" />
  </connection>
  <connection>
    <map_components component_1="receptor_dissociation_constants" component_2="probability_of_an_open_IP3_receptor_channel" />
    <map_variables variable_1="d3" variable_2="d3" />
    <map_variables variable_1="d5" variable_2="d5" />
    <map_variables variable_1="d1" variable_2="d1" />
    <map_variables variable_1="d2" variable_2="d2" />
  </connection>
  <connection>
    <map_components component_1="receptor_dissociation_constants" component_2="constants" />
    <map_variables variable_1="d3" variable_2="d3" />
    <map_variables variable_1="d4" variable_2="d4" />
    <map_variables variable_1="d1" variable_2="d1" />
  </connection>
  <connection>
    <map_components component_1="fluxes" component_2="x_001" />
    <map_variables variable_1="V1" variable_2="V1" />
    <map_variables variable_1="V4" variable_2="V4" />
  </connection>
  <connection>
    <map_components component_1="Ca_i" component_2="probability_of_an_open_IP3_receptor_channel" />
    <map_variables variable_1="Ca_i" variable_2="Ca_i" />
  </connection>
  <connection>
    <map_components component_1="constants" component_2="Ca_ER" />
    <map_variables variable_1="c1" variable_2="c1" />
  </connection>
  <connection>
    <map_components component_1="Ca_i" component_2="fluxes" />
    <map_variables variable_1="Ca_i" variable_2="Ca_i" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="fluxes" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="x_000" component_2="fluxes" />
    <map_variables variable_1="x_000" variable_2="x_000" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="Ca_i" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="x_010" component_2="x_011" />
    <map_variables variable_1="x_010" variable_2="x_010" />
  </connection>
  <connection>
    <map_components component_1="constants" component_2="receptor_dissociation_constants" />
    <map_variables variable_1="b4" variable_2="b4" />
    <map_variables variable_1="a5" variable_2="a5" />
    <map_variables variable_1="b3" variable_2="b3" />
    <map_variables variable_1="a2" variable_2="a2" />
    <map_variables variable_1="b2" variable_2="b2" />
    <map_variables variable_1="b5" variable_2="b5" />
    <map_variables variable_1="a3" variable_2="a3" />
    <map_variables variable_1="a4" variable_2="a4" />
  </connection>
  <connection>
    <map_components component_1="probability_of_an_open_IP3_receptor_channel" component_2="Ca_i" />
    <map_variables variable_1="P_open" variable_2="P_open" />
  </connection>
  <connection>
    <map_components component_1="Ca_ER" component_2="Ca_i" />
    <map_variables variable_1="Ca_ER" variable_2="Ca_ER" />
  </connection>
  <connection>
    <map_components component_1="x_001" component_2="x_011" />
    <map_variables variable_1="x_001" variable_2="x_001" />
  </connection>
  <connection>
    <map_components component_1="Ca_i" component_2="IP3" />
    <map_variables variable_1="Ca_i" variable_2="Ca_i" />
  </connection>
  <connection>
    <map_components component_1="fluxes" component_2="x_010" />
    <map_variables variable_1="V3" variable_2="V3" />
    <map_variables variable_1="V2" variable_2="V2" />
  </connection>
  <connection>
    <map_components component_1="x_001" component_2="fluxes" />
    <map_variables variable_1="x_001" variable_2="x_001" />
  </connection>
  <connection>
    <map_components component_1="environment" component_2="x_010" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  <connection>
    <map_components component_1="x_011" component_2="fluxes" />
    <map_variables variable_1="x_011" variable_2="x_011" />
  </connection>
  <connection>
    <map_components component_1="receptor_dissociation_constants" component_2="fluxes" />
    <map_variables variable_1="d4" variable_2="d4" />
    <map_variables variable_1="d5" variable_2="d5" />
  </connection>
  <rdf:RDF xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:ro="http://www.obofoundry.org/ro/ro.owl#" xmlns:opb="http://bhi.washington.edu/OPB#" xmlns:j.0="http://imc.org/vCard/3.0#">
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    <rdf:Description rdf:about="http://www.cellml.org/cellml/1.0#mitochondrial_model_1992">
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      <bqs:reference>
        <rdf:Description rdf:about="rdf:#0f182932-7b2c-4005-bb19-558e9f8cb9e7" bqs:Pubmed_id="1329108">
          <bqs:JournalArticle>
            <rdf:Description rdf:about="rdf:#8279b5b4-917b-45f3-9464-03d1fda3688a" bqs:volume="89" bqs:first_page="9895" bqs:last_page="9899">
              <dc:creator>
                <rdf:Seq rdf:about="rdf:#2faff9c3-2816-4201-9df0-b95ab7092547">
                  <rdf:li>
                    <bqs:Person rdf:about="rdf:#af1d72c9-ce72-46ee-98e0-f994d5f2405d">
                      <vCard:N>
                        <rdf:Description rdf:about="rdf:#f969f77c-aa8c-49d9-9bb8-37133ec48199" vCard:Given="Gary" vCard:Other="W">
                          <vCard:Family>De Young</vCard:Family>
                        </rdf:Description>
                      </vCard:N>
                    </bqs:Person>
                  </rdf:li>
                  <rdf:li>
                    <bqs:Person rdf:about="rdf:#88a9666b-d7ed-41b8-9502-8e601349ae0e">
                      <vCard:N rdf:resource="rdf:#d5303080-28ff-48b7-9013-aa6b05d08853" vCard:Given="Joel" vCard:Family="Keizer" />
                    </bqs:Person>
                  </rdf:li>
                </rdf:Seq>
              </dc:creator>
              <dc:title>A single-pool inositol 1,4,5-triphosphate-receptor-based model for               agonist-stimulated oscillations in Ca 2+ concentration</dc:title>
              <bqs:Journal>
                <rdf:Description rdf:about="rdf:#87b5dced-3171-44e3-a868-766d9876bcb8">
                  <dc:title>Proceedings of the National Academy of Science, USA</dc:title>
                </rdf:Description>
              </bqs:Journal>
              <dcterms:issued rdf:resource="rdf:#73f6218d-f1f6-4ebc-882b-6c095d51551c" dcterms:W3CDTF="1992-10-15" />
            </rdf:Description>
          </bqs:JournalArticle>
        </rdf:Description>
      </bqs:reference>
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    </rdf:Description>
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  </rdf:RDF>
</model>

