// creator: Family Cumin; Given David; d.cumin@auckland.ac.nz; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2010-01-18
// species: Homo Sapiens
// bio_entity: ventricular myocyte
// reference: subject_type keyword; electrophysiology; cardiac; ventricle; cardiovascular circulation
// reference: Pubmed_id 16766356; Family Shim; Given E; Other B; Family Leem; Given C; Other H; Family Abe; Given Y; Family Noma; Given A; title A new multi-scale simulation model of the circulation: from cells to system; W3CDTF 2006-06-15; title Philosophical Transactions of the Royal Society; volume 364; first_page 1483; last_page 1500
def model shim_2006 as
  // A new multi-scale simulation model of the circulation: from cells to system
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both COR and PCEnv to produce simulation results which are very similar to those generated by the original model. Please note that the CellML model translation is based on both the mathematics in the published paper and also the author's original C code.
  //
  // Model Structure
  //
  // ABSTRACT: We developed a comprehensive cell model that simulates the sequential cellular events from membrane excitation to contraction in the human ventricle. By combining this ventricular cell model with a lumped circulation model, we examined how blood pressure dynamics in the ventricle and aorta are related to the cellular processes. To convert cell contraction into ventricular pressure using Laplace's law, we introduced a simple geometric model of a ventricle: one shaped like a thin-walled hemisphere. The force of contraction of a single cell induces tension in the hemispheric ventricular wall, which generates the ventricular and aortic pressures in the lumped circulation model. The time courses of the hemodynamic properties, as well as the volume-pressure trajectory of the left ventricle, were well reproduced. Our multi-scale cardiovascular model, which covers from cardiac cells to the circulatory system, simulates the typical characteristics of heart mechanics, such as the pressure-volume relationship, stroke volume and the effect of the increased maximum free calcium concentration on cardiovascular hemodynamics. To test the cell-circulation coupling characteristics of the model, we simulated the effects of a decrease in L-type calcium channel conductance (cell level) on left ventricular pressure (system level). The variation due to different pacing frequencies for myocyte excitation was also investigated to assess the effects of heart rate on cardiac cells and the circulatory system.
  //
  // The original paper reference is cited below:
  //
  // A new multi-scale simulation model of the circulation: from cells to system, Eun Bo Shim, Chae Hun Leem, Yasuyuki Abe, and Akinori Noma, 2006, Philosophical Transactions of the Royal Society, 364, 1483-1500. PubMed ID: 16766356 (http://www.ncbi.nlm.nih.gov/pubmed/16766356).
  //
  // cell diagram
  //
  // Schematic diagram of the integrated model of the cardiovascular system. The TN model is the human cardiac myocyte model proposed by ten Tusscher et al. (2004) and the NL model represents the dynamic model of contraction involving the cross-bridges in the myocyte.
  def unit per_millisecond as
    unit second {pref: milli, expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar2 as
    unit millimolar {expo: 2};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit second {pref: milli, expo: -1};
  enddef;
  def unit mN_per_mm2_micrometre_millimolar as
    unit newton {pref: milli};
    unit metre {pref: milli, expo: -2};
    unit micrometre {expo: -1};
    unit millimolar {expo: -1};
  enddef;
  def unit millisecond_per_micrometre2 as
    unit millisecond;
    unit micrometre {expo: -2};
  enddef;
  def unit per_millimolar_millisecond as
    unit millimolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit mN_per_mm2 as
    unit newton {pref: milli};
    unit metre {pref: milli, expo: -2};
  enddef;
  def unit flow as
    unit litre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mN_per_mm2_micrometre as
    unit mN_per_mm2;
    unit micrometre {expo: -1};
  enddef;
  def unit mN_per_mm2_micrometre5 as
    unit mN_per_mm2;
    unit micrometre {expo: -5};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre3 as
    unit metre {pref: micro, expo: 3};
  enddef;
  def unit litre_micrometre3 as
    unit litre;
    unit micrometre3 {expo: -1};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit inductance as
    unit mmHg;
    unit second {expo: 2};
    unit mL {expo: -1};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.322};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit resistance as
    unit mmHg;
    unit s;
    unit mL {expo: -1};
  enddef;
  def unit s as
    unit second;
  enddef;
  def unit capacitance as
    unit mL;
    unit mmHg {expo: -1};
  enddef;
  def unit elastance as
    unit mmHg;
    unit mL {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit ng as
    unit gram {pref: nano};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit uA as
    unit ampere {pref: micro};
  enddef;
  def unit pA as
    unit ampere {pref: pico};
  enddef;
  def unit K as
    unit kelvin;
  enddef;
  def unit nmol as
    unit mole {pref: nano};
  enddef;
  def unit mmsq as
    unit mm {expo: 2};
  enddef;
  def unit mmcu as
    unit mm {expo: 3};
  enddef;
  def unit mssq as
    unit ms {expo: 2};
  enddef;
  def unit mscu as
    unit ms {expo: 3};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit mVsq as
    unit mV {expo: 2};
  enddef;
  def unit mV_per_ms as
    unit mV;
    unit ms {expo: -1};
  enddef;
  def unit mS as
    unit siemens {pref: milli};
  enddef;
  def unit mS_per_mmsq as
    unit mS;
    unit mm {expo: -2};
  enddef;
  def unit mS_per_mm as
    unit mS;
    unit mm {expo: -1};
  enddef;
  def unit uA_per_mmsq as
    unit uA;
    unit mm {expo: -2};
  enddef;
  def unit uA_per_mmcu as
    unit uA;
    unit mm {expo: -3};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit uF as
    unit farad {pref: micro};
  enddef;
  def unit uF_per_mmsq as
    unit uF;
    unit mm {expo: -2};
  enddef;
  def unit mM as
    unit nmol;
    unit mm {expo: -3};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit nN as
    unit newton {pref: nano};
  enddef;
  def unit mPa as
    unit pascal {pref: milli};
  enddef;
  def unit pJ as
    unit joule {pref: pico};
  enddef;
  def unit nW as
    unit watt {pref: nano};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit per_mm as
    unit mm {expo: -1};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit per_mL as
    unit mL {expo: -1};
  enddef;
  def unit per_mV_per_ms as
    unit mV {expo: -1};
    unit per_ms;
  enddef;
  def unit per_mM_per_ms as
    unit mM {expo: -1};
    unit per_ms;
  enddef;
  def unit uA_per_mmsq_per_mM as
    unit uA;
    unit mm {expo: -2};
    unit mM {expo: -1};
  enddef;
  def unit mm_per_ms as
    unit mm;
    unit per_ms;
  enddef;
  def unit gas_constant as
    unit pJ;
    unit nmol {expo: -1};
    unit K {expo: -1};
  enddef;
  def unit faradays_constant as
    unit nC;
    unit nmol {expo: -1};
  enddef;
  def unit pA_per_pF as
    unit ampere {pref: pico};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit nS_per_pF as
    unit siemens {pref: nano};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit uF_per_cmsq as
    unit farad {pref: micro};
    unit metre {pref: centi, expo: -2};
  enddef;
  def unit um as
    unit metre {pref: micro};
  enddef;
  def unit umsq as
    unit metre {pref: micro, expo: 2};
  enddef;
  def unit umcu as
    unit metre {pref: micro, expo: 3};
  enddef;
  def unit cmcu_per_uF_per_s as
    unit metre {pref: centi, expo: 3};
    unit farad {pref: micro, expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mmcu_per_uF_per_ms as
    unit metre {pref: milli, expo: 3};
    unit farad {pref: micro, expo: -1};
    unit second {pref: milli, expo: -1};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;

  def comp time as
    var time: ms {pub: out};
  enddef;

  def comp stimulus_protocol_params as
    var stimPeriod: ms {init: 1000, pub: out};
    var stimDuration: ms {init: 1, pub: out};
    var stimCurrent: uA_per_mmcu {init: 100, pub: out};
  enddef;

  def comp additional_currents as
    var IK_additional: uA_per_mmsq {pub: out};
    var ICa_additional: uA_per_mmsq {init: 0, pub: out};
    var INa_additional: uA_per_mmsq {init: 0, pub: out};
    var JCaSR_additional: mM_per_ms {init: 0, pub: out};
    var Istim: uA_per_mmsq {pub: in};
    IK_additional = -Istim;
  enddef;

  def comp default_parameters as
    var Am: per_mm {init: 200, pub: out};
    var Cm: uF_per_mmsq {init: 0.01, pub: out};
    var Capacitance: uF_per_mmsq {init: 0.00185, pub: out};
    var temperature: K {init: 310, pub: out};
    var vC: dimensionless {init: 0.49, pub: out};
    var vSR: dimensionless {init: 0.1, pub: out};
    var g_Na: mS_per_mmsq {init: 0.14838, pub: out};
    var g_K1: mS_per_mmsq {init: 0.05405, pub: out};
    var g_to: mS_per_mmsq {init: 0.00294, pub: out};
    var g_Kr: mS_per_mmsq {init: 0.00096, pub: out};
    var g_Ks: mS_per_mmsq {init: 0.00245, pub: out};
    var g_pK: mS_per_mmsq {init: 0.000146, pub: out};
    var g_bNa: mS_per_mmsq {init: 2.9e-6, pub: out};
    var g_bCa: mS_per_mmsq {init: 5.92e-6, pub: out};
    var p_KNa: dimensionless {init: 0.03, pub: out};
    var P_NaK: uA_per_mmsq {init: 0.01362, pub: out};
    var K_mNa: mM {init: 40, pub: out};
    var K_mK: mM {init: 1, pub: out};
    var g_CaL: mm_per_ms {init: 1.75e-6, pub: out};
    var Bufc: mM {init: 0.104, pub: out};
    var Kbufc: mM {init: 0.001, pub: out};
    var Bufsr: mM {init: 10, pub: out};
    var Kbufsr: mM {init: 0.3, pub: out};
    var Nao: mM {init: 140, pub: out};
    var Ko: mM {init: 5.4, pub: out};
    var Cao: mM {init: 2, pub: out};
    var V_leak: per_ms {init: 8e-5, pub: out};
    var K_up: mM {init: 0.00025, pub: out};
    var Vmax_up: mM_per_ms {init: 0.000425, pub: out};
    var a_rel: mM_per_ms {init: 0.016464, pub: out};
    var b_rel: mM {init: 0.25, pub: out};
    var c_rel: mM_per_ms {init: 0.008232, pub: out};
    var tau_g: ms {init: 2, pub: out};
    var g_pCa: uA_per_mmsq {init: 0.00825, pub: out};
    var K_pCa: mM {init: 0.0005, pub: out};
    var k_NaCa: uA_per_mmsq {init: 10, pub: out};
    var K_mNai: mM {init: 87.5, pub: out};
    var K_mCa: mM {init: 1.38, pub: out};
    var k_sat: dimensionless {init: 0.1, pub: out};
    var gamma: dimensionless {init: 0.35, pub: out};
    var alpha: dimensionless {init: 2.5, pub: out};
  enddef;

  def comp default_initial_conditions as
    var V_initial: mV {init: -86.2, pub: out};
    var m_initial: dimensionless {init: 0, pub: out};
    var h_initial: dimensionless {init: 0.75, pub: out};
    var j_initial: dimensionless {init: 0.75, pub: out};
    var s_initial: dimensionless {init: 1, pub: out};
    var r_initial: dimensionless {init: 0, pub: out};
    var Xr1_initial: dimensionless {init: 0, pub: out};
    var Xr2_initial: dimensionless {init: 1, pub: out};
    var Xs_initial: dimensionless {init: 0, pub: out};
    var d_initial: dimensionless {init: 0, pub: out};
    var f_initial: dimensionless {init: 1, pub: out};
    var fCa_initial: dimensionless {init: 1, pub: out};
    var g_initial: dimensionless {init: 1, pub: out};
    var Nai_initial: mM {init: 11.6, pub: out};
    var Ki_initial: mM {init: 138.3, pub: out};
    var Cai_total_initial: mM {init: 0.0064, pub: out};
    var CaSR_total_initial: mM {init: 4.2, pub: out};
  enddef;

  def comp membrane_potential as
    var V: mV {init: -86.2018875318461, pub: out};
    var V_initial: mV {pub: in};
    var Cm: uF_per_mmsq {pub: in};
    var time: ms {pub: in};
    var Itotal: uA_per_mmsq {pub: in};
    ode(V, time) = -Itotal/Cm;
  enddef;

  def comp total_membrane_current as
    var Itotal: uA_per_mmsq {pub: out, priv: out};
    var ICa_additional: uA_per_mmsq {pub: in};
    var INa_additional: uA_per_mmsq {pub: in};
    var IK_additional: uA_per_mmsq {pub: in};
    var INa: uA_per_mmsq {pub: in};
    var IK1: uA_per_mmsq {pub: in};
    var Ito: uA_per_mmsq {pub: in};
    var IKr: uA_per_mmsq {pub: in};
    var IKs: uA_per_mmsq {pub: in};
    var ICaL: uA_per_mmsq {pub: in};
    var INaCa: uA_per_mmsq {pub: in};
    var INaK: uA_per_mmsq {pub: in};
    var IpCa: uA_per_mmsq {pub: in};
    var IpK: uA_per_mmsq {pub: in};
    var IbCa: uA_per_mmsq {pub: in};
    var IbNa: uA_per_mmsq {pub: in};
    Itotal = ICa_additional+INa_additional+IK_additional+INa+IK1+Ito+IKr+IKs+ICaL+INaCa+INaK+IbNa+IbCa+IpCa+IpK;
  enddef;

  def comp K_flux as
    var K_flux: mM_per_ms {pub: out, priv: out};
    var vC: dimensionless {pub: in};
    var Am: per_mm {pub: in};
    var F: faradays_constant {pub: in};
    var IK_additional: uA_per_mmsq {pub: in};
    var IK1: uA_per_mmsq {pub: in};
    var Ito: uA_per_mmsq {pub: in};
    var IKr: uA_per_mmsq {pub: in};
    var IKs: uA_per_mmsq {pub: in};
    var INaK: uA_per_mmsq {pub: in};
    var IpK: uA_per_mmsq {pub: in};
    K_flux = Am/(vC*F)*(IK_additional+IK1+Ito+IKr+IKs+IpK-INaK*2{dimensionless});
  enddef;

  def comp Na_flux as
    var Na_flux: mM_per_ms {pub: out, priv: out};
    var vC: dimensionless {pub: in};
    var Am: per_mm {pub: in};
    var F: faradays_constant {pub: in};
    var INa_additional: uA_per_mmsq {pub: in};
    var INa: uA_per_mmsq {pub: in};
    var IbNa: uA_per_mmsq {pub: in};
    var INaK: uA_per_mmsq {pub: in};
    var INaCa: uA_per_mmsq {pub: in};
    Na_flux = Am/(vC*F)*(INa+INa_additional+IbNa+INaK*3{dimensionless}+INaCa*3{dimensionless});
  enddef;

  def comp Ca_flux as
    var Ca_flux: mM_per_ms {pub: out, priv: out};
    var vC: dimensionless {pub: in};
    var Am: per_mm {pub: in};
    var F: faradays_constant {pub: in};
    var ICa_additional: uA_per_mmsq {pub: in};
    var ICaL: uA_per_mmsq {pub: in};
    var IbCa: uA_per_mmsq {pub: in};
    var IpCa: uA_per_mmsq {pub: in};
    var INaCa: uA_per_mmsq {pub: in};
    Ca_flux = Am/(2{dimensionless}*vC*F)*(2{dimensionless}*INaCa-(ICa_additional+ICaL+IbCa+IpCa));
  enddef;

  def comp Ca_SR_flux as
    var Ca_SR_flux: mM_per_ms {pub: out, priv: out};
    var Jleak: mM_per_ms {pub: in};
    var Jup: mM_per_ms {pub: in};
    var Jrel: mM_per_ms {pub: in};
    var JCaSR_additional: mM_per_ms {pub: in};
    Ca_SR_flux = Jleak+Jrel+JCaSR_additional-Jup;
  enddef;

  def comp INa as
    var INa: uA_per_mmsq {pub: out};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var E_Na: mV {pub: in};
    var g_Na: mS_per_mmsq {pub: in};
    var m: dimensionless {pub: in};
    var h: dimensionless {pub: in};
    var j: dimensionless {pub: in};
    INa = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp IK1 as
    var IK1: uA_per_mmsq {pub: out};
    var g_K1: mS_per_mmsq {pub: in};
    var V: mV {pub: in, priv: out};
    var Ko: mM {pub: in};
    var E_K: mV {pub: in};
    var K1_infinity: dimensionless {pub: in};
    IK1 = g_K1*sqrt(Ko/5.4{mM})*K1_infinity*(V-E_K);
  enddef;

  def comp Ito as
    var Ito: uA_per_mmsq {pub: out};
    var g_to: mS_per_mmsq {pub: in};
    var E_K: mV {pub: in};
    var V: mV {pub: in, priv: out};
    var time: ms {pub: in, priv: out};
    var s: dimensionless {pub: in};
    var r: dimensionless {pub: in};
    Ito = g_to*r*s*(V-E_K);
  enddef;

  def comp IKr as
    var IKr: uA_per_mmsq {pub: out};
    var g_Kr: mS_per_mmsq {pub: in};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var E_K: mV {pub: in};
    var Ko: mM {pub: in};
    var Xr1: dimensionless {pub: in};
    var Xr2: dimensionless {pub: in};
    IKr = g_Kr*sqrt(Ko/5.4{mM})*Xr1*Xr2*(V-E_K);
  enddef;

  def comp IKs as
    var IKs: uA_per_mmsq {pub: out};
    var g_Ks: mS_per_mmsq {pub: in};
    var time: ms {pub: in};
    var V: mV {pub: in};
    var E_Ks: mV {pub: in};
    var Xs: dimensionless {pub: in};
    IKs = g_Ks*sqr(Xs)*(V-E_Ks);
  enddef;

  def comp INaK as
    var INaK: uA_per_mmsq {pub: out};
    var P_NaK: uA_per_mmsq {pub: in};
    var K_mNa: mM {pub: in};
    var K_mK: mM {pub: in};
    var V: mV {pub: in};
    var R: gas_constant {pub: in};
    var T: K {pub: in};
    var F: faradays_constant {pub: in};
    var Nai: mM {pub: in};
    var Ko: mM {pub: in};
    INaK = P_NaK*Ko*Nai/((Ko+K_mK)*(Nai+K_mNa)*(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0353{dimensionless}*exp(-V*F/(R*T))));
  enddef;

  def comp IpK as
    var IpK: uA_per_mmsq {pub: out};
    var g_pK: mS_per_mmsq {pub: in};
    var V: mV {pub: in};
    var E_K: mV {pub: in};
    IpK = g_pK*(V-E_K)/(1{dimensionless}+exp((25{mV}-V)/5.98{mV}));
  enddef;

  def comp IbNa as
    var IbNa: uA_per_mmsq {pub: out};
    var g_bNa: mS_per_mmsq {pub: in};
    var V: mV {pub: in};
    var E_Na: mV {pub: in};
    IbNa = g_bNa*(V-E_Na);
  enddef;

  def comp ICaL as
    var ICaL: uA_per_mmsq {pub: out};
    var g_CaL: mm_per_ms {pub: in};
    var time: ms {pub: in, priv: out};
    var V: mV {pub: in, priv: out};
    var Cai: mM {pub: in, priv: out};
    var Cao: mM {pub: in};
    var R: gas_constant {pub: in};
    var T: K {pub: in};
    var F: faradays_constant {pub: in};
    var d: dimensionless {pub: in};
    var f: dimensionless {pub: in};
    var fCa: dimensionless {pub: in};
    ICaL = g_CaL*d*f*fCa*4{dimensionless}*V*sqr(F)/(R*T)*(Cai*exp(2{dimensionless}*V*F/(R*T))-0.341{dimensionless}*Cao)/(exp(2{dimensionless}*V*F/(R*T))-1{dimensionless});
  enddef;

  def comp IpCa as
    var IpCa: uA_per_mmsq {pub: out};
    var g_pCa: uA_per_mmsq {pub: in};
    var K_pCa: mM {pub: in};
    var Cai: mM {pub: in};
    IpCa = g_pCa*Cai/(K_pCa+Cai);
  enddef;

  def comp INaCa as
    var INaCa: uA_per_mmsq {pub: out};
    var k_NaCa: uA_per_mmsq {pub: in};
    var K_mNai: mM {pub: in};
    var K_mCa: mM {pub: in};
    var k_sat: dimensionless {pub: in};
    var gamma: dimensionless {pub: in};
    var alpha: dimensionless {pub: in};
    var V: mV {pub: in};
    var R: gas_constant {pub: in};
    var T: K {pub: in};
    var F: faradays_constant {pub: in};
    var Nai: mM {pub: in};
    var Nao: mM {pub: in};
    var Cai: mM {pub: in};
    var Cao: mM {pub: in};
    INaCa = k_NaCa*(exp(gamma*V*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((gamma-1{dimensionless})*V*F/(R*T))*pow(Nao, 3{dimensionless})*Cai*alpha)/((pow(K_mNai, 3{dimensionless})+pow(Nao, 3{dimensionless}))*(K_mCa+Cao)*(1{dimensionless}+k_sat*exp((gamma-1{dimensionless})*V*F/(R*T))));
  enddef;

  def comp IbCa as
    var IbCa: uA_per_mmsq {pub: out};
    var g_bCa: mS_per_mmsq {pub: in};
    var V: mV {pub: in};
    var E_Ca: mV {pub: in};
    IbCa = g_bCa*(V-E_Ca);
  enddef;

  def comp ENa as
    var z: dimensionless {init: 1};
    var T: K {pub: in};
    var intracellular_concentration: mM {pub: in};
    var extracellular_concentration: mM {pub: in};
    var R: gas_constant {init: 8314.472, pub: out};
    var F: faradays_constant {init: 96485, pub: out};
    var reversal_potential: mV {pub: out};
    reversal_potential = R*T/(z*F)*ln(extracellular_concentration/intracellular_concentration);
  enddef;

  def comp EK as
    var z: dimensionless {init: 1};
    var T: K {pub: in};
    var intracellular_concentration: mM {pub: in};
    var extracellular_concentration: mM {pub: in};
    var R: gas_constant {init: 8314.472, pub: out};
    var F: faradays_constant {init: 96485, pub: out};
    var reversal_potential: mV {pub: out};
    reversal_potential = R*T/(z*F)*ln(extracellular_concentration/intracellular_concentration);
  enddef;

  def comp ECa as
    var z: dimensionless {init: 2};
    var T: K {pub: in};
    var intracellular_concentration: mM {pub: in};
    var extracellular_concentration: mM {pub: in};
    var R: gas_constant {init: 8314.472, pub: out};
    var F: faradays_constant {init: 96485, pub: out};
    var reversal_potential: mV {pub: out};
    reversal_potential = R*T/(z*F)*ln(extracellular_concentration/intracellular_concentration);
  enddef;

  def comp EKs as
    var z: dimensionless {init: 1};
    var T: K {pub: in};
    var intracellular_concentration_1: mM {pub: in};
    var extracellular_concentration_1: mM {pub: in};
    var intracellular_concentration_2: mM {pub: in};
    var extracellular_concentration_2: mM {pub: in};
    var multiplier_1: dimensionless {init: 1};
    var multiplier_2: dimensionless {pub: in};
    var R: gas_constant {init: 8314.472, pub: out};
    var F: faradays_constant {init: 96485, pub: out};
    var reversal_potential: mV {pub: out};
    reversal_potential = R*T/(z*F)*ln((multiplier_1*extracellular_concentration_1+multiplier_2*extracellular_concentration_2)/(multiplier_1*intracellular_concentration_1+multiplier_2*intracellular_concentration_2));
  enddef;

  def comp Nai as
    var Nai: mM {init: 10.9532662826763, pub: out};
    var time: ms {pub: in};
    var Na_flux: mM_per_ms {pub: in};
    ode(Nai, time) = -Na_flux;
  enddef;

  def comp Ki as
    var Ki: mM {init: 138.048487061761, pub: out};
    var time: ms {pub: in};
    var K_flux: mM_per_ms {pub: in};
    ode(Ki, time) = -K_flux;
  enddef;

  def comp Cai as
    def unit mMsq as
      unit mM {expo: 2};
    enddef;
    var Cai: mM {pub: out};
    var CaSR: mM {pub: out};
    var Cai_total: mM {init: 0.00682342989751132, pub: out};
    var CaSR_total: mM {init: 6.39862043165719, pub: out};
    var Cai_buf: mM {pub: out};
    var CaSR_buf: mM {pub: out};
    var Bufc: mM {pub: in};
    var Kbufc: mM {pub: in};
    var Bufsr: mM {pub: in};
    var Kbufsr: mM {pub: in};
    var vSR: dimensionless {pub: in};
    var vC: dimensionless {pub: in};
    var Am: per_mm {pub: in};
    var F: faradays_constant {pub: in};
    var time: ms {pub: in};
    var Capacitance: uF_per_mmsq {pub: in};
    var Ca_flux: mM_per_ms {pub: in};
    var Ca_SR_flux: mM_per_ms {pub: in};
    var aCai: dimensionless;
    var bCai: mM;
    var cCai: mMsq;
    var aCaSR: dimensionless;
    var bCaSR: mM;
    var cCaSR: mMsq;
    aCai = -1{dimensionless};
    bCai = Cai_total+Kbufc+Bufc;
    cCai = -Bufc*Cai_total;
    Cai_buf = (sqrt(sqr(bCai)-4{dimensionless}*aCai*cCai)-bCai)/(2{dimensionless}*aCai);
    Cai = Cai_total-Cai_buf;
    ode(Cai_total, time) = Ca_flux+Ca_SR_flux;
    aCaSR = -1{dimensionless};
    bCaSR = CaSR_total+Kbufsr+Bufsr;
    cCaSR = -Bufsr*CaSR_total;
    CaSR_buf = (sqrt(sqr(bCaSR)-4{dimensionless}*aCaSR*cCaSR)-bCaSR)/(2{dimensionless}*aCaSR);
    CaSR = CaSR_total-CaSR_buf;
    ode(CaSR_total, time) = vC/vSR*(-Ca_SR_flux);
  enddef;

  def comp Jleak as
    var Jleak: mM_per_ms {pub: out};
    var V_leak: per_ms {pub: in};
    var Cai: mM {pub: in};
    var CaSR: mM {pub: in};
    Jleak = V_leak*(CaSR-Cai);
  enddef;

  def comp Jup as
    var Jup: mM_per_ms {pub: out};
    var Vmax_up: mM_per_ms {pub: in};
    var Cai: mM {pub: in};
    var K_up: mM {pub: in};
    Jup = Vmax_up/(1{dimensionless}+sqr(K_up)/sqr(Cai));
  enddef;

  def comp Jrel as
    var Jrel: mM_per_ms {pub: out};
    var Cai: mM {pub: in};
    var CaSR: mM {pub: in};
    var a_rel: mM_per_ms {pub: in};
    var b_rel: mM {pub: in};
    var c_rel: mM_per_ms {pub: in};
    var tau_g: ms {pub: in};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var d: dimensionless {pub: in};
    var g: dimensionless {pub: in};
    Jrel = (a_rel*sqr(CaSR)/(sqr(b_rel)+sqr(CaSR))+c_rel)*d*g;
  enddef;

  def comp m_gate as
    var m: dimensionless {init: 0.00139496502667641, pub: out};
    var tau_m: ms {pub: out};
    var m_infinity: dimensionless {pub: out};
    var alpha_m: per_ms;
    var beta_m: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    m_infinity = 1{dimensionless}/sqr(1{dimensionless}+exp((-56.86{mV}-V)/9.03{mV}));
    alpha_m = 1{per_ms}/(1{dimensionless}+exp((-60{mV}-V)/5{mV}));
    beta_m = 0.1{per_ms}/(1{dimensionless}+exp((35{mV}+V)/5{mV}))+0.1{per_ms}/(1{dimensionless}+exp((V-50{mV})/200{mV}));
    tau_m = 1{mscu}*alpha_m*beta_m;
    ode(m, time) = (m_infinity-m)/tau_m;
  enddef;

  def comp h_gate as
    var h: dimensionless {init: 0.770575154565896, pub: out};
    var tau_h: ms {pub: out};
    var h_infinity: dimensionless {pub: out};
    var alpha_h: per_ms;
    var beta_h: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    h_infinity = 1{dimensionless}/sqr(1{dimensionless}+exp((71.55{mV}+V)/7.43{mV}));
    alpha_h = sel
      case V < -40{mV}:
        0.057{per_ms}*exp(-(80{mV}+V)/6.8{mV});
      otherwise:
        0{per_ms};
    endsel;
    beta_h = sel
      case V < -40{mV}:
        2.7{per_ms}*exp(0.079{per_mV}*V)+3.1e5{per_ms}*exp(0.3485{per_mV}*V);
      otherwise:
        0.77{dimensionless}/(0.13{ms}*(1{dimensionless}+exp(-(V+10.66{mV})/11.1{mV})));
    endsel;
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_infinity-h)/tau_h;
  enddef;

  def comp j_gate as
    var j: dimensionless {init: 0.770443444995156, pub: out};
    var tau_j: ms {pub: out};
    var j_infinity: dimensionless {pub: out};
    var alpha_j: per_ms;
    var beta_j: per_ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    j_infinity = 1{dimensionless}/sqr(1{dimensionless}+exp((71.55{mV}+V)/7.43{mV}));
    alpha_j = sel
      case V < -40{mV}:
        (-2.5428e4{per_mV_per_ms}*exp(0.2444{per_mV}*V)-6.948e-6{per_mV_per_ms}*exp(-0.04391{per_mV}*V))*(V+37.78{mV})/(1{dimensionless}+exp(0.311{per_mV}*(V+79.23{mV})));
      otherwise:
        0{per_ms};
    endsel;
    beta_j = sel
      case V < -40{mV}:
        0.02424{per_ms}*exp(-0.01052{per_mV}*V)/(1{dimensionless}+exp(-0.1378{per_mV}*(V+40.14{mV})));
      otherwise:
        0.6{per_ms}*exp(0.057{per_mV}*V)/(1{dimensionless}+exp(-0.1{per_mV}*(V+32{mV})));
    endsel;
    tau_j = 1{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_infinity-j)/tau_j;
  enddef;

  def comp K1_gate as
    var K1_infinity: dimensionless {pub: out};
    var alpha_K1: dimensionless;
    var beta_K1: dimensionless;
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    K1_infinity = alpha_K1/(alpha_K1+beta_K1);
    alpha_K1 = 0.1{dimensionless}/(1{dimensionless}+exp(0.06{per_mV}*(V-(E_K+200{mV}))));
    beta_K1 = (3{dimensionless}*exp(0.0002{per_mV}*(V-E_K+100{mV}))+exp(0.1{per_mV}*(V-(E_K+10{mV}))))/(1{dimensionless}+exp(-0.5{per_mV}*(V-E_K)));
  enddef;

  def comp r_gate as
    var r: dimensionless {init: 2.05519333410682e-8, pub: out};
    var r_infinity: dimensionless;
    var tau_r: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(r, time) = (r_infinity-r)/tau_r;
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp((20{mV}-V)/6{mV}));
    tau_r = 9.5{ms}*exp(-sqr(V+40{mV})/1800{mVsq})+0.8{ms};
  enddef;

  def comp s_gate as
    var s: dimensionless {init: 0.999998222617307, pub: out};
    var s_infinity: dimensionless;
    var tau_s: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(s, time) = (s_infinity-s)/tau_s;
    s_infinity = 1{dimensionless}/(1{dimensionless}+exp((20{mV}+V)/5{mV}));
    tau_s = 85{ms}*exp(-sqr(V+45{mV})/320{mVsq})+5{ms}/(1{dimensionless}+exp((V-20{mV})/5{mV}))+3{ms};
  enddef;

  def comp Xr1_gate as
    var Xr1: dimensionless {init: 0.000184456278122146, pub: out};
    var alpha_Xr1: per_ms;
    var beta_Xr1: per_ms;
    var Xr1_infinity: dimensionless;
    var tau_Xr1: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(Xr1, time) = (Xr1_infinity-Xr1)/tau_Xr1;
    Xr1_infinity = 1{dimensionless}/(1{dimensionless}+exp((-26{mV}-V)/7{mV}));
    alpha_Xr1 = 450{per_ms}/(1{dimensionless}+exp((-45{mV}-V)/10{mV}));
    beta_Xr1 = 6{per_ms}/(1{dimensionless}+exp((V+30{mV})/11.5{mV}));
    tau_Xr1 = 1{mscu}*alpha_Xr1*beta_Xr1;
  enddef;

  def comp Xr2_gate as
    var Xr2: dimensionless {init: 0.481278373434186, pub: out};
    var alpha_Xr2: per_ms;
    var beta_Xr2: per_ms;
    var Xr2_infinity: dimensionless;
    var tau_Xr2: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(Xr2, time) = (Xr2_infinity-Xr2)/tau_Xr2;
    Xr2_infinity = 1{dimensionless}/(1{dimensionless}+exp((88{mV}+V)/24{mV}));
    alpha_Xr2 = 3{per_ms}/(1{dimensionless}+exp((-60{mV}-V)/20{mV}));
    beta_Xr2 = 1.12{per_ms}/(1{dimensionless}+exp((V-60{mV})/20{mV}));
    tau_Xr2 = 1{mscu}*alpha_Xr2*beta_Xr2;
  enddef;

  def comp Xs_gate as
    var Xs: dimensionless {init: 0.00301801313676975, pub: out};
    var alpha_Xs: per_ms;
    var beta_Xs: per_ms;
    var Xs_infinity: dimensionless;
    var tau_Xs: ms;
    var V: mV {pub: in};
    var time: ms {pub: in};
    ode(Xs, time) = (Xs_infinity-Xs)/tau_Xs;
    Xs_infinity = 1{dimensionless}/(1{dimensionless}+exp((-5{mV}-V)/14{mV}));
    alpha_Xs = 1100{per_ms}/sqrt(1{dimensionless}+exp((-10{mV}-V)/6{mV}));
    beta_Xs = 1{per_ms}/(1{dimensionless}+exp((V-60{mV})/20{mV}));
    tau_Xs = 1{mscu}*alpha_Xs*beta_Xs;
  enddef;

  def comp d_gate as
    var d: dimensionless {init: 1.98573194199555e-5, pub: out};
    var alpha_d: per_ms {pub: out};
    var beta_d: per_ms {pub: out};
    var tau_d: ms {pub: out};
    var gamma_d: ms {pub: out};
    var d_infinity: dimensionless {pub: out};
    var V: mV {pub: in};
    var time: ms {pub: in};
    d_infinity = 1{dimensionless}/(1{dimensionless}+exp((-5{mV}-V)/7.5{mV}));
    alpha_d = 1.4{per_ms}/(1{dimensionless}+exp((-35{mV}-V)/13{mV}))+0.25{per_ms};
    beta_d = 1.4{per_ms}/(1{dimensionless}+exp((5{mV}+V)/5{mV}));
    gamma_d = 1{ms}/(1{dimensionless}+exp((50{mV}-V)/20{mV}));
    tau_d = 1{mscu}*alpha_d*beta_d+gamma_d;
    ode(d, time) = (d_infinity-d)/tau_d;
  enddef;

  def comp f_gate as
    var f: dimensionless {init: 0.999672095225684, pub: out};
    var tau_f: ms {pub: out};
    var f_infinity: dimensionless {pub: out};
    var V: mV {pub: in};
    var time: ms {pub: in};
    f_infinity = 1{dimensionless}/(1{dimensionless}+exp((20{mV}+V)/7{mV}));
    tau_f = 1125{ms}*exp(-sqr(V+27{mV})/240{mVsq})+165{ms}/(1{dimensionless}+exp((25{mV}-V)/10{mV}))+80{ms};
    ode(f, time) = (f_infinity-f)/tau_f;
  enddef;

  def comp fCa_gate as
    var fCa: dimensionless {init: 1.00603163752055, pub: out};
    var alpha_fCa: dimensionless;
    var beta_fCa: dimensionless;
    var tau_fCa: ms {init: 2, pub: out};
    var gamma_fCa: dimensionless;
    var fCa_infinity: dimensionless {pub: out};
    var V: mV {pub: in};
    var time: ms {pub: in};
    var Cai: mM {pub: in};
    fCa_infinity = (alpha_fCa+beta_fCa+gamma_fCa+0.23{dimensionless})/1.46{dimensionless};
    alpha_fCa = 1{dimensionless}/(1{dimensionless}+pow(Cai/0.000325{mM}, 8{dimensionless}));
    beta_fCa = 0.1{dimensionless}/(1{dimensionless}+exp((Cai-0.0005{mM})/0.0001{mM}));
    gamma_fCa = 0.2{dimensionless}/(1{dimensionless}+exp((Cai-0.00075{mM})/0.0008{mM}));
    ode(fCa, time) = sel
      case (fCa_infinity > fCa) and (V > -60{mV}):
        0{per_ms};
      otherwise:
        (fCa_infinity-fCa)/tau_fCa;
    endsel;
  enddef;

  def comp g_gate as
    var g: dimensionless {init: 0.999938939681683, pub: out};
    var g_infinity: dimensionless {pub: out};
    var tau_g: ms {pub: in};
    var Cai: mM {pub: in};
    var V: mV {pub: in};
    var time: ms {pub: in};
    g_infinity = sel
      case Cai <= 0.00035{mM}:
        1{dimensionless}/(1{dimensionless}+pow(Cai, 6{dimensionless})/pow(0.00035{mM}, 6{dimensionless}));
      otherwise:
        1{dimensionless}/(1{dimensionless}+pow(Cai, 16{dimensionless})/pow(0.00035{mM}, 16{dimensionless}));
    endsel;
    ode(g, time) = sel
      case (g_infinity > g) and (V > -60{mV}):
        0{per_ms};
      otherwise:
        (g_infinity-g)/tau_g;
    endsel;
  enddef;

  def comp stimulus_protocol as
    var IStim: uA_per_mmsq {pub: out};
    var IstimStart: ms {init: 100};
    var IstimEnd: ms {init: 5000000};
    var stimCurrent: uA_per_mmcu {init: 100};
    var IstimPeriod: ms {init: 1000};
    var IstimPulseDuration: ms {init: 1};
    var Am: per_mm {pub: in};
    var time: ms {pub: in};
    IStim = sel
      case (time >= IstimStart) and (time <= IstimEnd) and (time-IstimStart-floor((time-IstimStart)/IstimPeriod)*IstimPeriod <= IstimPulseDuration):
        stimCurrent/Am;
      otherwise:
        0{uA_per_mmsq};
    endsel;
  enddef;

  def comp NL_model as
    var xHalfSL: dimensionless;
    var Cai: millimolar {pub: in};
    var ForceExt: mN_per_mm2 {pub: out};
    var time: ms {pub: in};
    var cTnCaEff: millimolar;
    var cTnCa: millimolar {init: 0.074511924815213};
    var cTnCaCB: millimolar {init: 0.0145019379063895};
    var cTnCB: millimolar {init: 0.00190549185450413};
    var Q_a: per_millisecond;
    var Q_b: per_millisecond;
    var Q_r: per_millisecond;
    var Q_d: per_millisecond;
    var Q_d1: per_millisecond;
    var Q_d2: per_millisecond;
    var Y_1: per_millimolar_millisecond {init: 39};
    var Y_2: per_millisecond {init: 0.0039};
    var Y_3: per_millisecond {init: 0.03};
    var Y_4: per_millisecond {init: 0.12};
    var Y_d: ms {init: 0.027};
    var Z_1: per_millisecond {init: 0.03};
    var Z_2: per_millisecond {init: 0.0039};
    var Z_3: per_millimolar_millisecond {init: 1560};
    var OptiHSL: dimensionless {init: 1.17};
    var xLLimitCB: dimensionless {init: 0.005};
    var R: dimensionless {init: 20};
    var SlidingR: per_ms {init: 1.2};
    var xInext: dimensionless {init: 1.13295171019871};
    var cTn: millimolar;
    var trpnbar: millimolar {init: 0.07};
    var cCaTropC: millimolar;
    var xhhh: dimensionless;
    var cTRPN: millimolar {pub: out};
    var AForceCB: mN_per_mm2 {init: 1800000};
    var xNewCBF: mN_per_mm2;
    var xKcoeff: mN_per_mm2 {init: 140000};
    var ForceP: mN_per_mm2;
    var ForceB: mN_per_mm2;
    var V_LV: mL {pub: in};
    var radiusLV: micrometre;
    var Fmult: dimensionless {init: 0.8};
    var Tension: mN_per_mm2;
    var P_LV: mmHg {pub: out};
    radiusLV = pow(3{dimensionless}*V_LV/2{dimensionless}/pi, 1{dimensionless}/3{dimensionless});
    xHalfSL = 10000{dimensionless}*2{dimensionless}*pi*radiusLV/236550{micrometre};
    Tension = ForceExt*Fmult;
    P_LV = 2{micrometre}*Tension/radiusLV*1000{dimensionless}/133{dimensionless};
    ode(xInext, time) = SlidingR*(xHalfSL-xInext-xLLimitCB);
    cTn = 1{millimolar}-cTnCa-cTnCaCB-cTnCB;
    Q_b = Y_1*Cai*cTn/1{millimolar}-Z_1*cTnCa/1{millimolar};
    cTnCaEff = cTnCa/exp(R*sqr(xHalfSL-OptiHSL));
    Q_a = Y_2*cTnCaEff/1{millimolar}-Z_2*cTnCaCB/1{millimolar};
    Q_r = Y_3*cTnCaCB/1{millimolar}-Z_3*cTnCB*Cai/1{millimolar};
    Q_d1 = Y_d*sqr(SlidingR*(xHalfSL-xInext-xLLimitCB))*cTnCaCB/1{millimolar};
    Q_d = Y_4*cTnCB/1{millimolar};
    Q_d2 = Y_d*sqr(SlidingR*(xHalfSL-xInext-xLLimitCB))*cTnCB/1{millimolar};
    cCaTropC = trpnbar*(Q_r+Q_d2-Q_b)/1{per_millisecond};
    ode(cTnCa, time) = Q_b*1{millimolar}-Q_a*1{millimolar};
    ode(cTnCaCB, time) = Q_a*1{millimolar}-Q_r*1{millimolar}-Q_d1*1{millimolar};
    ode(cTnCB, time) = Q_r*1{millimolar}-Q_d*1{millimolar}-Q_d2*1{millimolar};
    xhhh = xHalfSL-xInext;
    cTRPN = (cTnCaCB+cTnCB)*trpnbar/1{millimolar};
    xNewCBF = AForceCB*(cTnCaCB+cTnCB)*trpnbar/1{millimolar2};
    ForceP = sel
      case xHalfSL > 0.97{dimensionless}:
        xKcoeff*pow(xHalfSL-0.97{dimensionless}, 5{dimensionless});
      otherwise:
        30{mN_per_mm2}*(xHalfSL-0.97{dimensionless});
    endsel;
    ForceB = xNewCBF*xhhh;
    ForceExt = ForceP+ForceB;
  enddef;

  def comp circulation as
    var time: ms {pub: in};
    var P_LV: mmHg {pub: in};
    var P_RV: mmHg;
    var P_A: mmHg;
    var P_V: mmHg;
    var P_PA: mmHg;
    var P_PV: mmHg;
    var P_AO: mmHg;
    var R_A: resistance {init: 1000};
    var R_AO: resistance {init: 60};
    var R_V: resistance {init: 28};
    var R_RO: resistance {init: 3};
    var R_PA: resistance {init: 80};
    var R_PV: resistance {init: 10};
    var R_LO: resistance {init: 6};
    var C_A: capacitance {init: 3.5};
    var C_AO: capacitance {init: 0.3};
    var C_V: capacitance {init: 110};
    var C_PA: capacitance {init: 4.3};
    var C_PV: capacitance {init: 8.4};
    var V_A0: mL {init: 715};
    var V_V0: mL {init: 2750};
    var V_RV0: mL {init: 20};
    var V_PA0: mL {init: 90};
    var V_PV0: mL {init: 490};
    var V_LV0: mL {init: 20};
    var V_AO0: mL {init: 0};
    var Vs_LV: mL {init: 144.687729485028};
    var Vs_RV: mL {init: -5851.58291726876};
    var Vs_A: mL {init: 435.463300626406};
    var Vs_V: mL {init: 5965.81859634061};
    var Vs_PA: mL {init: 356.531769433971};
    var Vs_PV: mL {init: 685.284664433661};
    var Vs_AO: mL {init: 37.4256033611631};
    var F_PV: flow;
    var F_LO: flow;
    var F_AO: flow;
    var F_A: flow;
    var F_V: flow;
    var F_RO: flow;
    var F_PA: flow;
    var V_LV: mL {pub: out};
    var V_A: mL;
    var V_AO: mL;
    var V_V: mL;
    var V_RV: mL;
    var V_PA: mL;
    var V_PV: mL;
    var EmaxLV: elastance {init: 2.95};
    var EmaxRV: elastance {init: 1.75};
    var kelv: per_mL {init: 0.014};
    var kerv: per_mL {init: 0.011};
    var P0lv: mmHg {init: 1.5};
    var P0rv: mmHg {init: 1.5};
    var lva: mmHg;
    var rva: mmHg;
    var lvb: mmHg;
    var rvb: mmHg;
    F_PV = sel
      case (P_PV-P_LV)/R_PV < 0{flow}:
        0{flow};
      otherwise:
        (P_PV-P_LV)/R_PV;
    endsel;
    F_LO = sel
      case (P_LV-P_AO)/R_LO < 0{flow}:
        0{flow};
      otherwise:
        (P_LV-P_AO)/R_LO;
    endsel;
    F_AO = (P_AO-P_A)/R_AO;
    F_A = (P_A-P_V)/R_A;
    F_V = sel
      case (P_V-P_RV)/R_V < 0{flow}:
        0{flow};
      otherwise:
        (P_V-P_RV)/R_V;
    endsel;
    F_RO = sel
      case (P_RV-P_PA)/R_V < 0{flow}:
        0{flow};
      otherwise:
        (P_RV-P_PA)/R_V;
    endsel;
    F_PA = (P_PA-P_PV)/R_PA;
    ode(Vs_LV, time) = F_PV-F_LO;
    ode(Vs_AO, time) = F_LO-F_AO;
    ode(Vs_A, time) = F_AO-F_A;
    ode(Vs_V, time) = F_A-F_V;
    ode(Vs_RV, time) = F_V-F_RO;
    ode(Vs_PA, time) = F_RO-F_PA;
    ode(Vs_PV, time) = F_PA-F_PV;
    P_A = Vs_A/C_A;
    P_AO = Vs_AO/C_AO;
    P_V = Vs_V/C_V;
    P_PA = Vs_PA/C_PA;
    P_PV = Vs_PV/C_PV;
    V_LV = Vs_LV+V_LV0;
    V_A = Vs_A+V_A0;
    V_AO = Vs_AO+V_AO0;
    V_V = Vs_V+V_V0;
    V_RV = Vs_RV+V_RV0;
    V_PA = Vs_PA+V_PA0;
    V_PV = Vs_PV+V_PV0;
    lva = EmaxLV*(V_LV-Vs_LV);
    rva = EmaxRV*(V_RV-Vs_RV);
    lvb = P0lv*(exp(kelv*V_LV)-1{dimensionless});
    rvb = P0rv*(exp(kerv*V_RV)-1{dimensionless});
    P_RV = (P_LV-lvb)*rva/(lva-lvb)+(lva-P_LV)*rvb/(lva-lvb);
  enddef;
  def map between circulation and time for
    vars time and time;
  enddef;
  def map between circulation and NL_model for
    vars V_LV and V_LV;
    vars P_LV and P_LV;
  enddef;
  def map between NL_model and Cai for
    vars Cai and Cai;
  enddef;
  def map between NL_model and time for
    vars time and time;
  enddef;
  def map between stimulus_protocol and default_parameters for
    vars Am and Am;
  enddef;
  def map between K1_gate and EK for
    vars E_K and reversal_potential;
  enddef;
  def map between r_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between s_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between Xr1_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between Xr2_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between Xs_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between d_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between f_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between fCa_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between g_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between g_gate and Cai for
    vars Cai and Cai;
  enddef;
  def map between g_gate and default_parameters for
    vars tau_g and tau_g;
  enddef;
  def map between membrane_potential and time for
    vars time and time;
  enddef;
  def map between default_parameters and membrane_potential for
    vars Cm and Cm;
  enddef;
  def map between total_membrane_current and additional_currents for
    vars ICa_additional and ICa_additional;
    vars INa_additional and INa_additional;
    vars IK_additional and IK_additional;
  enddef;
  def map between default_parameters and K_flux for
    vars vC and vC;
    vars Am and Am;
  enddef;
  def map between additional_currents and K_flux for
    vars IK_additional and IK_additional;
  enddef;
  def map between default_parameters and Na_flux for
    vars vC and vC;
    vars Am and Am;
  enddef;
  def map between additional_currents and Na_flux for
    vars INa_additional and INa_additional;
  enddef;
  def map between default_parameters and Ca_flux for
    vars vC and vC;
    vars Am and Am;
  enddef;
  def map between additional_currents and Ca_flux for
    vars ICa_additional and ICa_additional;
  enddef;
  def map between Ca_SR_flux and additional_currents for
    vars JCaSR_additional and JCaSR_additional;
  enddef;
  def map between INa and time for
    vars time and time;
  enddef;
  def map between default_parameters and INa for
    vars g_Na and g_Na;
  enddef;
  def map between IK1 and default_parameters for
    vars g_K1 and g_K1;
    vars Ko and Ko;
  enddef;
  def map between default_parameters and Ito for
    vars g_to and g_to;
  enddef;
  def map between Ito and time for
    vars time and time;
  enddef;
  def map between default_parameters and IKr for
    vars g_Kr and g_Kr;
    vars Ko and Ko;
  enddef;
  def map between IKr and time for
    vars time and time;
  enddef;
  def map between default_parameters and IKs for
    vars g_Ks and g_Ks;
  enddef;
  def map between IKs and time for
    vars time and time;
  enddef;
  def map between default_parameters and INaK for
    vars P_NaK and P_NaK;
    vars K_mNa and K_mNa;
    vars K_mK and K_mK;
    vars temperature and T;
    vars Ko and Ko;
  enddef;
  def map between default_parameters and IpK for
    vars g_pK and g_pK;
  enddef;
  def map between default_parameters and IbNa for
    vars g_bNa and g_bNa;
  enddef;
  def map between default_parameters and ICaL for
    vars g_CaL and g_CaL;
    vars Cao and Cao;
    vars temperature and T;
  enddef;
  def map between ICaL and time for
    vars time and time;
  enddef;
  def map between default_parameters and IpCa for
    vars g_pCa and g_pCa;
    vars K_pCa and K_pCa;
  enddef;
  def map between default_parameters and INaCa for
    vars k_NaCa and k_NaCa;
    vars K_mNai and K_mNai;
    vars K_mCa and K_mCa;
    vars k_sat and k_sat;
    vars gamma and gamma;
    vars alpha and alpha;
    vars temperature and T;
    vars Nao and Nao;
    vars Cao and Cao;
  enddef;
  def map between default_parameters and IbCa for
    vars g_bCa and g_bCa;
  enddef;
  def map between default_parameters and ENa for
    vars temperature and T;
    vars Nao and extracellular_concentration;
  enddef;
  def map between default_parameters and EK for
    vars temperature and T;
    vars Ko and extracellular_concentration;
  enddef;
  def map between default_parameters and ECa for
    vars temperature and T;
    vars Cao and extracellular_concentration;
  enddef;
  def map between default_parameters and EKs for
    vars temperature and T;
    vars Ko and extracellular_concentration_1;
    vars Nao and extracellular_concentration_2;
    vars p_KNa and multiplier_2;
  enddef;
  def map between time and Nai for
    vars time and time;
  enddef;
  def map between time and Ki for
    vars time and time;
  enddef;
  def map between Cai and default_parameters for
    vars Bufc and Bufc;
    vars Kbufc and Kbufc;
    vars Bufsr and Bufsr;
    vars Kbufsr and Kbufsr;
    vars vSR and vSR;
    vars vC and vC;
    vars Am and Am;
    vars Capacitance and Cm;
  enddef;
  def map between Cai and time for
    vars time and time;
  enddef;
  def map between Jleak and default_parameters for
    vars V_leak and V_leak;
  enddef;
  def map between default_parameters and Jup for
    vars Vmax_up and Vmax_up;
    vars K_up and K_up;
  enddef;
  def map between default_parameters and Jrel for
    vars a_rel and a_rel;
    vars b_rel and b_rel;
    vars c_rel and c_rel;
    vars tau_g and tau_g;
  enddef;
  def map between Jrel and time for
    vars time and time;
  enddef;
  def map between m_gate and time for
    vars time and time;
  enddef;
  def map between m_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between h_gate and time for
    vars time and time;
  enddef;
  def map between h_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between j_gate and time for
    vars time and time;
  enddef;
  def map between j_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between K1_gate and membrane_potential for
    vars V and V;
  enddef;
  def map between r_gate and time for
    vars time and time;
  enddef;
  def map between s_gate and time for
    vars time and time;
  enddef;
  def map between Xr1_gate and time for
    vars time and time;
  enddef;
  def map between Xr2_gate and time for
    vars time and time;
  enddef;
  def map between Xs_gate and time for
    vars time and time;
  enddef;
  def map between d_gate and time for
    vars time and time;
  enddef;
  def map between f_gate and time for
    vars time and time;
  enddef;
  def map between fCa_gate and time for
    vars time and time;
  enddef;
  def map between g_gate and time for
    vars time and time;
  enddef;
  def map between time and stimulus_protocol for
    vars time and time;
  enddef;
  def map between additional_currents and stimulus_protocol for
    vars Istim and IStim;
  enddef;
  def map between membrane_potential and default_initial_conditions for
    vars V_initial and V_initial;
  enddef;
  def map between membrane_potential and total_membrane_current for
    vars Itotal and Itotal;
  enddef;
  def map between membrane_potential and INa for
    vars V and V;
  enddef;
  def map between membrane_potential and IK1 for
    vars V and V;
  enddef;
  def map between membrane_potential and IKr for
    vars V and V;
  enddef;
  def map between membrane_potential and IKs for
    vars V and V;
  enddef;
  def map between membrane_potential and INaK for
    vars V and V;
  enddef;
  def map between membrane_potential and IpK for
    vars V and V;
  enddef;
  def map between membrane_potential and IbNa for
    vars V and V;
  enddef;
  def map between membrane_potential and ICaL for
    vars V and V;
  enddef;
  def map between membrane_potential and INaCa for
    vars V and V;
  enddef;
  def map between membrane_potential and IbCa for
    vars V and V;
  enddef;
  def map between membrane_potential and Jrel for
    vars V and V;
  enddef;
  def map between total_membrane_current and INa for
    vars INa and INa;
  enddef;
  def map between total_membrane_current and IK1 for
    vars IK1 and IK1;
  enddef;
  def map between total_membrane_current and Ito for
    vars Ito and Ito;
  enddef;
  def map between total_membrane_current and IKr for
    vars IKr and IKr;
  enddef;
  def map between total_membrane_current and IKs for
    vars IKs and IKs;
  enddef;
  def map between total_membrane_current and INaK for
    vars INaK and INaK;
  enddef;
  def map between total_membrane_current and IpK for
    vars IpK and IpK;
  enddef;
  def map between total_membrane_current and IbNa for
    vars IbNa and IbNa;
  enddef;
  def map between total_membrane_current and ICaL for
    vars ICaL and ICaL;
  enddef;
  def map between total_membrane_current and IpCa for
    vars IpCa and IpCa;
  enddef;
  def map between total_membrane_current and INaCa for
    vars INaCa and INaCa;
  enddef;
  def map between total_membrane_current and IbCa for
    vars IbCa and IbCa;
  enddef;
  def map between INa and ENa for
    vars E_Na and reversal_potential;
  enddef;
  def map between INaK and ENa for
    vars F and F;
    vars R and R;
  enddef;
  def map between IbNa and ENa for
    vars E_Na and reversal_potential;
  enddef;
  def map between INaCa and ENa for
    vars F and F;
    vars R and R;
  enddef;
  def map between ENa and Nai for
    vars intracellular_concentration and Nai;
  enddef;
  def map between ENa and Na_flux for
    vars F and F;
  enddef;
  def map between Nai and Na_flux for
    vars Na_flux and Na_flux;
  enddef;
  def map between Na_flux and INa for
    vars INa and INa;
  enddef;
  def map between Nai and INaK for
    vars Nai and Nai;
  enddef;
  def map between Na_flux and INaK for
    vars INaK and INaK;
  enddef;
  def map between Na_flux and IbNa for
    vars IbNa and IbNa;
  enddef;
  def map between Nai and INaCa for
    vars Nai and Nai;
  enddef;
  def map between Na_flux and INaCa for
    vars INaCa and INaCa;
  enddef;
  def map between Ito and EK for
    vars E_K and reversal_potential;
  enddef;
  def map between IKr and EK for
    vars E_K and reversal_potential;
  enddef;
  def map between IKs and EKs for
    vars E_Ks and reversal_potential;
  enddef;
  def map between IpK and EK for
    vars E_K and reversal_potential;
  enddef;
  def map between EK and Ki for
    vars intracellular_concentration and Ki;
  enddef;
  def map between EK and K_flux for
    vars F and F;
  enddef;
  def map between EKs and Ki for
    vars intracellular_concentration_1 and Ki;
  enddef;
  def map between EKs and Nai for
    vars intracellular_concentration_2 and Nai;
  enddef;
  def map between Ki and K_flux for
    vars K_flux and K_flux;
  enddef;
  def map between K_flux and IK1 for
    vars IK1 and IK1;
  enddef;
  def map between K_flux and Ito for
    vars Ito and Ito;
  enddef;
  def map between K_flux and IKr for
    vars IKr and IKr;
  enddef;
  def map between K_flux and IKs for
    vars IKs and IKs;
  enddef;
  def map between K_flux and IpK for
    vars IpK and IpK;
  enddef;
  def map between K_flux and INaK for
    vars INaK and INaK;
  enddef;
  def map between ICaL and ECa for
    vars F and F;
    vars R and R;
  enddef;
  def map between IbCa and ECa for
    vars E_Ca and reversal_potential;
  enddef;
  def map between ECa and Cai for
    vars intracellular_concentration and Cai;
    vars F and F;
  enddef;
  def map between ECa and Ca_flux for
    vars F and F;
  enddef;
  def map between Ca_flux and Cai for
    vars Ca_flux and Ca_flux;
  enddef;
  def map between Ca_SR_flux and Cai for
    vars Ca_SR_flux and Ca_SR_flux;
  enddef;
  def map between Cai and IpCa for
    vars Cai and Cai;
  enddef;
  def map between Cai and INaCa for
    vars Cai and Cai;
  enddef;
  def map between Cai and Jleak for
    vars Cai and Cai;
    vars CaSR and CaSR;
  enddef;
  def map between Cai and Jup for
    vars Cai and Cai;
  enddef;
  def map between Cai and Jrel for
    vars Cai and Cai;
    vars CaSR and CaSR;
  enddef;
  def map between Jrel and d_gate for
    vars d and d;
  enddef;
  def map between Ca_flux and ICaL for
    vars ICaL and ICaL;
  enddef;
  def map between Ca_flux and IpCa for
    vars IpCa and IpCa;
  enddef;
  def map between Ca_flux and INaCa for
    vars INaCa and INaCa;
  enddef;
  def map between Ca_flux and IbCa for
    vars IbCa and IbCa;
  enddef;
  def map between Ca_SR_flux and Jleak for
    vars Jleak and Jleak;
  enddef;
  def map between Ca_SR_flux and Jup for
    vars Jup and Jup;
  enddef;
  def map between Ca_SR_flux and Jrel for
    vars Jrel and Jrel;
  enddef;
  def map between INa and m_gate for
    vars m and m;
  enddef;
  def map between INa and h_gate for
    vars h and h;
  enddef;
  def map between INa and j_gate for
    vars j and j;
  enddef;
  def map between IK1 and K1_gate for
    vars K1_infinity and K1_infinity;
  enddef;
  def map between IK1 and EK for
    vars E_K and reversal_potential;
  enddef;
  def map between Ito and r_gate for
    vars r and r;
  enddef;
  def map between Ito and membrane_potential for
    vars V and V;
  enddef;
  def map between Ito and s_gate for
    vars s and s;
  enddef;
  def map between IKr and Xr1_gate for
    vars Xr1 and Xr1;
  enddef;
  def map between IKr and Xr2_gate for
    vars Xr2 and Xr2;
  enddef;
  def map between IKs and Xs_gate for
    vars Xs and Xs;
  enddef;
  def map between ICaL and d_gate for
    vars d and d;
  enddef;
  def map between ICaL and f_gate for
    vars f and f;
  enddef;
  def map between ICaL and Cai for
    vars Cai and Cai;
  enddef;
  def map between fCa_gate and Cai for
    vars Cai and Cai;
  enddef;
  def map between ICaL and fCa_gate for
    vars fCa and fCa;
  enddef;
  def map between Jrel and g_gate for
    vars g and g;
  enddef;
enddef;
