<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 11/22/2010 at 4:16:58 at PM using:

COR (0.9.31.1409)
Copyright 2002-2010 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model name="swat_2004" cmeta:id="swat_2004" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
<!-- documentation -->
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Bifurcation analysis of the regulatory modules of the mammalian G1/S transition</title>
				<author>
					<firstname>Amy</firstname>
					<surname>You</surname>
					<affiliation>
						<shortaffil>Auckland Bioengineering Institute, University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>This model has been built with the differential expressions in Swat's 2004 paper for the G1/S transition of the mammalian cell cycle under the influence of growth factors.  The paramters (pRB,E2F1,AP_1,CycE/CycD) in this model are core proteins responsible for progression from the G1 phase to the S-phase of the cell cycle. Other parameters are chosen to reflect the experimentally known features. The values used for this particular model were taken from Figure 3 and 4 on page 1509 and reproduces the corresponding curves. This file is known to run in OpenCell and COR.</para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>Mathematical models of the cell cycle can contribute to an understanding of its basic mechanisms. Modern simulation tools make the analysis of key components and their interactions very effective. This paper focuses on the role of small modules and feedbacks in the gene-protein network governing the G1/S transition in mammalian cells. Mutations in this network may lead to uncontrolled cell proliferation. Bifurcation analysis helps to identify the key components of this extremely complex interaction network. </para>
				<para>
					Bifurcation analysis of the regulatory modules of the mammalian G1/S transition, Swat M, Kel A, Herzel H, 2004, <emphasis>bioinformatics</emphasis>
					, 20, 1506-1511 <ulink url="http://www.ncbi.nlm.nih.gov/pubmed/15231543">PubMed ID: 15231543</ulink>
				</para>
				<informalfigure float="0" id="______">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>Model Diagram</title>
							</objectinfo>
							<imagedata fileref="swat_2004.png"/>
						</imageobject>
					</mediaobject>
					<caption>Transition from the G0-phase to the S-phase under the influence of growth factors. The phase-dependent phosphorylation of pRB is carried out successively by the complexes of cyclins D, E and cyclin-dependent kinases cdk4, 6 resp. cdk2. </caption>
				</informalfigure>
			</sect1>
		</article>
	</documentation>
	<!--Metadata-->
   	<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
		<rdf:Description rdf:about="">
			<dc:creator rdf:parseType="Resource">
				<vCard:N rdf:parseType="Resource">
					<vCard:Family>You</vCard:Family>
					<vCard:Given>Dongxue</vCard:Given>
					<vCard:Other>Amy</vCard:Other>
				</vCard:N>
				<vCard:EMAIL rdf:parseType="Resource">
					<rdf:value>dyou063@aucklanduni.ac.nz</rdf:value>
					<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
				</vCard:EMAIL>
				<vCard:ORG rdf:parseType="Resource">
					<vCard:Orgname>The University of Auckland</vCard:Orgname>
					<vCard:Orgunit>Auckland Bioengineering Institute</vCard:Orgunit>
				</vCard:ORG>
			</dc:creator>
			<dcterms:created rdf:parseType="Resource">
				<dcterms:W3CDTF>22-11-2010</dcterms:W3CDTF>
			</dcterms:created>
		</rdf:Description>
		<rdf:Description rdf:about="#swat_2004">
			<dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Bifurcation analysis of the regulatory modules of the mammalian G1/S transition</dc:title>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:parseType="Resource">
				<rdf:value>This is the CellML description of the 2004 mathematical model developed by Maciej Swat, Alexander Kel and Hanspeter Herzel for the G1/S transition of the mammalian cell cycle under the influence of growth factors
				</rdf:value>
				<dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource">
					<vCard:FN xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Amy You</vCard:FN>
				</dc:creator>
			</cmeta:comment>
			<cmeta:species xmlns:cmeta="http://www.cellml.org/metadata/1.0#">G1/S</cmeta:species>
			<bqs:reference rdf:parseType="Resource">
				<dc:subject rdf:parseType="Resource">
					<bqs:subject_type>keyword</bqs:subject_type>
					<rdf:value>
						<rdf:Bag>
							<rdf:li>Bifurcation</rdf:li>
							<rdf:li>G1/S transition</rdf:li>
							<rdf:li>Cell Cycle</rdf:li>
							<rdf:li>S-phase</rdf:li>
							<rdf:li>M-phase</rdf:li>
							<rdf:li>Circadian Rhythms</rdf:li>
						</rdf:Bag>
					</rdf:value>
				</dc:subject>
			</bqs:reference>
			<bqs:reference rdf:parseType="Resource">
				<bqs:Pubmed_id>15231543</bqs:Pubmed_id>
				<bqs:JournalArticle rdf:parseType="Resource">
					<dc:creator>
						<rdf:Seq>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N rdf:parseType="Resource">
										<vCard:Family>Herzel</vCard:Family>
										<vCard:Given>Hanspeter</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N rdf:parseType="Resource">
										<vCard:Family>Kel</vCard:Family>
										<vCard:Given>Alexander</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
							<rdf:li rdf:parseType="Resource">
								<bqs:Person rdf:parseType="Resource">
									<vCard:N rdf:parseType="Resource">
										<vCard:Family>Swat</vCard:Family>
										<vCard:Given>GMaciej</vCard:Given>
									</vCard:N>
								</bqs:Person>
							</rdf:li>
						</rdf:Seq>
					</dc:creator>
					<dc:title>Bifurcation analysis of the regulatory modules of the mammalian G1/S transition</dc:title>
					<dcterms:issued rdf:parseType="Resource">
						<dcterms:W3CDTF>2004-03</dcterms:W3CDTF>
					</dcterms:issued>
					<bqs:Journal rdf:parseType="Resource">
						<dc:title>Bioinformatics</dc:title>
					</bqs:Journal>
					<bqs:volume>20</bqs:volume>
					<bqs:first_page>1506</bqs:first_page>
					<bqs:last_page>1511</bqs:last_page>
				</bqs:JournalArticle>
			</bqs:reference>
		</rdf:Description>
	</rdf:RDF> 
   <!-- units -->  
   <units name="min">
      <unit units="second" multiplier="60"/>
   </units>
   <units name="per_min">
      <unit units="min" exponent="-1"/>
   </units>
   <units name="volumn">
      <unit units="dimensionless"/>
   </units>
   <units name="substance">
      <unit units="dimensionless"/>
   </units>
   <component name="environment1">
      <variable name="time" units="min" public_interface="out"/>
   </component>
   <component name="Core_Module">
      <variable name="time" units="min" public_interface="in"/>
      <variable name="pRB" units="substance" initial_value="0.1" public_interface="out"/>
      <variable name="E2F1" units="substance" initial_value="0.1" public_interface="out"/>
      <variable name="pRB_p" units="substance" public_interface="in" private_interface="out"/>
      <variable name="CycD_a" units="substance" public_interface="in" private_interface="out"/>
      <variable name="k_1" units="per_min" initial_value="1"/>
      <variable name="Km_1" units="dimensionless" initial_value="0.5"/>
      <variable name="J_11" units="dimensionless" initial_value="0.5"/>
      <variable name="J_61" units="dimensionless" initial_value="5"/>
      <variable name="k_16" units="per_min" initial_value="0.4" public_interface="out"/>
      <variable name="k_61" units="per_min" initial_value="0.3" public_interface="out"/>
      <variable name="theta_pRB" units="per_min" initial_value="0.005"/>
      <variable name="theta_E2F1" units="per_min" initial_value="0.1"/>
      <variable name="k_p" units="per_min" initial_value="0.05"/>
      <variable name="k_2" units="per_min" initial_value="1.6"/>
      <variable name="a" units="dimensionless" initial_value="0.04"/>
      <variable name="Km_2" units="dimensionless" initial_value="4"/>
      <variable name="J_12" units="dimensionless" initial_value="5"/>
      <variable name="J_62" units="dimensionless" initial_value="8"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>pRB</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <apply>
                        <times/>
                        <ci>k_1</ci>
                        <apply>
                           <divide/>
                           <ci>E2F1</ci>
                           <apply>
                              <plus/>
                              <ci>Km_1</ci>
                              <ci>E2F1</ci>
                           </apply>
                        </apply>
                        <apply>
                           <divide/>
                           <ci>J_11</ci>
                           <apply>
                              <plus/>
                              <ci>J_11</ci>
                              <ci>pRB</ci>
                           </apply>
                        </apply>
                        <apply>
                           <divide/>
                           <ci>J_61</ci>
                           <apply>
                              <plus/>
                              <ci>J_61</ci>
                              <ci>pRB_p</ci>
                           </apply>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>k_16</ci>
                        <ci>pRB</ci>
                        <ci>CycD_a</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_61</ci>
                     <ci>pRB_p</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>theta_pRB</ci>
                  <ci>pRB</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>E2F1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>k_p</ci>
                  <apply>
                     <times/>
                     <ci>k_2</ci>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <apply>
                              <power/>
                              <ci>a</ci>
                              <cn cellml:units="dimensionless">2</cn>
                           </apply>
                           <apply>
                              <power/>
                              <ci>E2F1</ci>
                              <cn cellml:units="dimensionless">2</cn>
                           </apply>
                        </apply>
                        <apply>
                           <plus/>
                           <apply>
                              <power/>
                              <ci>Km_2</ci>
                              <cn cellml:units="dimensionless">2</cn>
                           </apply>
                           <apply>
                              <power/>
                              <ci>E2F1</ci>
                              <cn cellml:units="dimensionless">2</cn>
                           </apply>
                        </apply>
                     </apply>
                     <apply>
                        <divide/>
                        <ci>J_12</ci>
                        <apply>
                           <plus/>
                           <ci>J_12</ci>
                           <ci>pRB</ci>
                        </apply>
                     </apply>
                     <apply>
                        <divide/>
                        <ci>J_62</ci>
                        <apply>
                           <plus/>
                           <ci>J_62</ci>
                           <ci>pRB_p</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>theta_E2F1</ci>
                  <ci>E2F1</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="first_extension">
      <variable name="time" units="min" public_interface="in" private_interface="out"/>
      <variable name="pRB" units="substance" public_interface="in" private_interface="out"/>
      <variable name="E2F1" units="substance" public_interface="in" private_interface="out"/>
      <variable name="pRB_p" units="substance" initial_value="0.1" public_interface="out"/>
      <variable name="CycD_a" units="substance" initial_value="0.1" public_interface="out"/>
      <variable name="AP_1" units="substance" initial_value="0.1" public_interface="out"/>
      <variable name="CycD_i" units="substance" initial_value="0.1" public_interface="out"/>
      <variable name="pRB_pp" units="substance" public_interface="in" private_interface="out"/>
      <variable name="CycE_a" units="substance" public_interface="in" private_interface="out"/>
      <variable name="Fm" units="per_min" initial_value="0.0057" public_interface="out"/>
      <variable name="k_3" units="per_min" initial_value="0.05"/>
      <variable name="k_23" units="per_min" initial_value="0.3"/>
      <variable name="J_13" units="dimensionless" initial_value="0.002"/>
      <variable name="J_63" units="dimensionless" initial_value="2"/>
      <variable name="k_43" units="per_min" initial_value="0.01"/>
      <variable name="k_34" units="per_min" initial_value="0.04"/>
      <variable name="Km_4" units="dimensionless" initial_value="0.3"/>
      <variable name="theta_CycD_i" units="per_min" initial_value="0.023"/>
      <variable name="theta_CycD_a" units="per_min" initial_value="0.03"/>
      <variable name="theta_AP_1" units="per_min" initial_value="0.01"/>
      <variable name="k_25" units="per_min" initial_value="0.9"/>
      <variable name="J_15" units="dimensionless" initial_value="0.001"/>
      <variable name="J_65" units="dimensionless" initial_value="6"/>
      <variable name="k_16" units="per_min" public_interface="in" private_interface="out"/>
      <variable name="k_61" units="per_min" public_interface="in" private_interface="out"/>
      <variable name="k_67" units="per_min" initial_value="0.7" public_interface="out"/>
      <variable name="k_76" units="per_min" initial_value="0.1" public_interface="out"/>
      <variable name="theta_pRB_p" units="per_min" initial_value="0.06"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CycD_i</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <ci>k_3</ci>
                        <ci>AP_1</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>k_23</ci>
                        <ci>E2F1</ci>
                        <apply>
                           <divide/>
                           <ci>J_13</ci>
                           <apply>
                              <plus/>
                              <ci>J_13</ci>
                              <ci>pRB</ci>
                           </apply>
                        </apply>
                        <apply>
                           <divide/>
                           <ci>J_63</ci>
                           <apply>
                              <plus/>
                              <ci>J_63</ci>
                              <ci>pRB_p</ci>
                           </apply>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>k_43</ci>
                        <ci>CycD_a</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_34</ci>
                     <ci>CycD_i</ci>
                     <apply>
                        <divide/>
                        <ci>CycD_a</ci>
                        <apply>
                           <plus/>
                           <ci>Km_4</ci>
                           <ci>CycD_a</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>theta_CycD_i</ci>
                  <ci>CycD_i</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CycD_a</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
                     <ci>k_34</ci>
                     <ci>CycD_i</ci>
                     <apply>
                        <divide/>
                        <ci>CycD_a</ci>
                        <apply>
                           <plus/>
                           <ci>Km_4</ci>
                           <ci>CycD_a</ci>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_43</ci>
                     <ci>CycD_a</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>theta_CycD_a</ci>
                  <ci>CycD_a</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>AP_1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <ci>Fm</ci>
                  <apply>
                     <times/>
                     <ci>k_25</ci>
                     <ci>E2F1</ci>
                     <apply>
                        <divide/>
                        <ci>J_15</ci>
                        <apply>
                           <plus/>
                           <ci>J_15</ci>
                           <ci>pRB</ci>
                        </apply>
                     </apply>
                     <apply>
                        <divide/>
                        <ci>J_65</ci>
                        <apply>
                           <plus/>
                           <ci>J_65</ci>
                           <ci>pRB_p</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>theta_AP_1</ci>
                  <ci>AP_1</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>pRB_p</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <minus/>
                     <apply>
                        <minus/>
                        <apply>
                           <times/>
                           <ci>k_16</ci>
                           <ci>pRB</ci>
                           <ci>CycD_a</ci>
                        </apply>
                        <apply>
                           <times/>
                           <ci>k_61</ci>
                           <ci>pRB_p</ci>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>k_67</ci>
                        <ci>pRB_p</ci>
                        <ci>CycE_a</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_76</ci>
                     <ci>pRB_pp</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>theta_pRB_p</ci>
                  <ci>pRB_p</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="Second_extension">
      <variable name="time" units="min" public_interface="in"/>
      <variable name="pRB_p" units="substance" public_interface="in" private_interface="out"/>
      <variable name="CycE_a" units="substance" initial_value="0.1" public_interface="out"/>
      <variable name="E2F1" units="substance" public_interface="in" private_interface="out"/>
      <variable name="pRB" units="substance" public_interface="in" private_interface="out"/>
      <variable name="pRB_pp" units="substance" initial_value="0.1" public_interface="out"/>
      <variable name="CycE_i" units="substance" initial_value="0.1" public_interface="out"/>
      <variable name="k_67" units="per_min" public_interface="in" private_interface="out"/>
      <variable name="k_76" units="per_min" public_interface="in" private_interface="out"/>
      <variable name="theta_pRB_pp" units="per_min" initial_value="0.04"/>
      <variable name="k_28" units="per_min" initial_value="0.06"/>
      <variable name="J_18" units="dimensionless" initial_value="0.6"/>
      <variable name="J_68" units="dimensionless" initial_value="7"/>
      <variable name="k_98" units="per_min" initial_value="0.01"/>
      <variable name="k_89" units="per_min" initial_value="0.07"/>
      <variable name="Km_9" units="dimensionless" initial_value="0.005"/>
      <variable name="theta_CycE_i" units="per_min" initial_value="0.06"/>
      <variable name="theta_CycE_a" units="per_min" initial_value="0.05"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>pRB_pp</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
                     <ci>k_67</ci>
                     <ci>pRB_p</ci>
                     <ci>CycE_a</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_76</ci>
                     <ci>pRB_pp</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>theta_pRB_pp</ci>
                  <ci>pRB_pp</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CycE_i</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <ci>k_28</ci>
                        <ci>E2F1</ci>
                        <apply>
                           <divide/>
                           <ci>J_18</ci>
                           <apply>
                              <plus/>
                              <ci>J_18</ci>
                              <ci>pRB</ci>
                           </apply>
                        </apply>
                        <apply>
                           <divide/>
                           <ci>J_68</ci>
                           <apply>
                              <plus/>
                              <ci>J_68</ci>
                              <ci>pRB_p</ci>
                           </apply>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>k_98</ci>
                        <ci>CycE_a</ci>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_89</ci>
                     <ci>CycE_i</ci>
                     <apply>
                        <divide/>
                        <ci>CycE_a</ci>
                        <apply>
                           <plus/>
                           <ci>Km_9</ci>
                           <ci>CycE_a</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>theta_CycE_i</ci>
                  <ci>CycE_i</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>CycE_a</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <apply>
                     <times/>
                     <ci>k_89</ci>
                     <ci>CycE_i</ci>
                     <apply>
                        <divide/>
                        <ci>CycE_a</ci>
                        <apply>
                           <plus/>
                           <ci>Km_9</ci>
                           <ci>CycE_a</ci>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <times/>
                     <ci>k_98</ci>
                     <ci>CycE_a</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>theta_CycE_a</ci>
                  <ci>CycE_a</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <connection>
      <map_components component_1="environment1" component_2="Core_Module"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment1" component_2="first_extension"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="environment1" component_2="Second_extension"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="Core_Module" component_2="first_extension"/>
      <map_variables variable_1="pRB" variable_2="pRB"/>
      <map_variables variable_1="E2F1" variable_2="E2F1"/>
      <map_variables variable_1="pRB_p" variable_2="pRB_p"/>
      <map_variables variable_1="CycD_a" variable_2="CycD_a"/>
      <map_variables variable_1="k_16" variable_2="k_16"/>
      <map_variables variable_1="k_61" variable_2="k_61"/>
   </connection>
   <connection>
      <map_components component_1="first_extension" component_2="Second_extension"/>
      <map_variables variable_1="CycE_a" variable_2="CycE_a"/>
      <map_variables variable_1="pRB_pp" variable_2="pRB_pp"/>
      <map_variables variable_1="k_67" variable_2="k_67"/>
      <map_variables variable_1="k_76" variable_2="k_76"/>
      <map_variables variable_1="pRB_p" variable_2="pRB_p"/>
   </connection>
   <connection>
      <map_components component_1="Core_Module" component_2="Second_extension"/>
      <map_variables variable_1="pRB" variable_2="pRB"/>
      <map_variables variable_1="E2F1" variable_2="E2F1"/>
   </connection>
</model>