def model my_model as
  // Epithelial cell model incorporating SS models of GLUT2, SGLT1, NKA, and IKir
  // Note that volume is expressed in Litres, energy in Joules,
  // molar qtys in femtomoles (fmol), concentrations in milli-moles per litre (= fmol/pL),
  // charge in Coulombs, voltage in milli-Volts (mV=J_per_C), chemical potential in J_per_mol
  // Cell membrane capacitance of 1F is C^2/J
  def unit dim as
    unit dimensionless;
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit mol_per_fmol as
    unit mole;
    unit fmol {expo: -1};
  enddef;
  def unit pL as
    unit litre {pref: pico};
  enddef;
  def unit pL_per_mm3 as
    unit litre {pref: pico};
    unit meter {expo: -3, pref: milli};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit L_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit pL_per_s as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit per_m as
    unit meter {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit M_per_L as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit mM2 as
    unit mM {expo: 2};
  enddef;
  def unit millimols_per_mol as
    unit mole {pref: milli};
    unit mole {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit J_per_s as
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit C_per_s as
    unit coulomb;
    unit second {expo: -1};
  enddef;
  def unit mm2 as
    unit meter {expo: 2, pref: milli};
  enddef;
  def unit C_per_mm2_per_s as
    unit coulomb;
    unit mm2 {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_mol_per_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit C2_per_J as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
  enddef;
  def unit C2_per_J_per_mm2 as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
    unit mm2 {expo: -1};
  enddef;
  def unit mol_C_per_J_per_s as
    unit mole;
    unit coulomb;
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit fmol_per_mm2_per_s as
    unit fmol;
    unit mm2 {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit fmol_C_per_J_per_s as
    unit fmol;
    unit coulomb;
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_C_per_s as
    unit joule;
    unit coulomb {expo: -1};
    unit second {expo: -1};
  enddef;

  def comp main as
    var t: second;
    var R: J_per_mol_per_K {init: 8.314};
    var T: kelvin {init: 308};
    var F: C_per_mol {init: 0.964853321e5};
    var RT: J_per_mol;
    var RTF: J_per_C;
    RT = R*T;
    RTF = RT/F;
    // area-to-volume ratio
    var area: mm2 {init: 1e-3};
    // ----Balance eqns for whole cell using scaling for protein density ---
    var Scale_GLUT2: dim {init: 0.1};
    // var Scale_GLUT2: dim;
    // var Scale_SGLT1: dim {init: 0.5};
    var Scale_SGLT1: dim;
    var Scale_NKE: dim {init: 0.28};
    // var Scale_Kir:   dim {init: 1};
    var Scale_Kir: dim;
    v_K_tot = 0{fmol_per_mm2_per_s};
    v_Na_tot = 0{fmol_per_mm2_per_s};
    // v_Glc_tot = 0{fmol_per_mm2_per_s};
    // ----------------- Outward electrical current -------------------
    var v_e_NKE: C_per_mm2_per_s;
    var v_e_SGLT1: C_per_mm2_per_s;
    var v_e_Kir: C_per_mm2_per_s;
    var v_e_tot: C_per_mm2_per_s;
    v_e_NKE = F*1e-15{mol_per_fmol}*v_NKE;
    v_e_SGLT1 = -F*1e-15{mol_per_fmol}*2{dim}*v_SGLT1;
    v_e_Kir = F*1e-15{mol_per_fmol}*v_Kir;
    v_e_tot = v_e_NKE+v_e_SGLT1+v_e_Kir;
    var u_e: J_per_C {init: 0};
    ode(u_e, t) = -0.12{J_per_C_per_s};
    // var C_m: C2_per_J_per_mm2 {init: 1e-2};
    // ode(u_e, t) = F/C_m*(2{dim}*v_SGLT1-v_NKE-v_Kir);
    // ----------------- Outward potassium flux -------------------
    var v_K_NKE: fmol_per_mm2_per_s;
    var v_K_Kir: fmol_per_mm2_per_s;
    var v_K_tot: fmol_per_mm2_per_s;
    v_K_NKE = -2{dim}*v_NKE;
    v_K_Kir = v_Kir;
    v_K_tot = v_K_NKE+v_K_Kir;
    // ----------------- Outward sodium flux -------------------
    var v_Na_NKE: fmol_per_mm2_per_s;
    var v_Na_SGLT1: fmol_per_mm2_per_s;
    var v_Na_tot: fmol_per_mm2_per_s;
    v_Na_NKE = 3{dim}*v_NKE;
    v_Na_SGLT1 = -2{dim}*v_SGLT1;
    v_Na_tot = v_Na_NKE+v_Na_SGLT1;
    // ----------------- Outward Glucose flux -------------------
    var v_Glc_SGLT1: fmol_per_mm2_per_s;
    var v_Glc_GLUT2: fmol_per_mm2_per_s;
    var v_Glc_tot: fmol_per_mm2_per_s;
    v_Glc_SGLT1 = -v_SGLT1;
    v_Glc_GLUT2 = v_GLUT2;
    v_Glc_tot = v_Glc_SGLT1+v_Glc_GLUT2;
    // ----------------- Boundary conditions -------------------
    var c_Na_gut: mM {init: 140};
    var c_Nao: mM {init: 140};
    var c_Nai: mM {init: 10};
    var c_Ko: mM {init: 4.5};
    var c_Ki: mM {init: 140};
    var c_Glc_gut: mM {init: 40};
    var c_Glc_o: mM {init: 0};
    var c_Glc_i: mM {init: 1};
    // var c_Glc_i:   mM;
    var c_ATP: mM {init: 1};
    var c_ADP: mM {init: 0.035};
    var c_Pi: mM {init: 0.8};
    var c_H: mM;
    var pH: dim {init: 7.2};
    c_H = 1e3{mM}*pow(10{dim}, -pH);
    var q_Na_gut: fmol;
    var q_Na_i: fmol;
    var q_Na_o: fmol;
    var q_K_i: fmol;
    var q_K_o: fmol;
    var q_ATP: fmol;
    var q_ADP: fmol;
    var q_Pi: fmol;
    var q_H: fmol;
    var q_Glc_gut: fmol;
    var q_Glc_i: fmol;
    var W_o: pL {init: 1};
    var W_i: pL {init: 1};
    var W_gut: pL {init: 1};
    // -------------------- GLUT2 model -----------------------
    //
    // Note that kappa_GLUT2 (pL/s) x conc (mM=fmol/pL) /area (mm2) = surface flux (fmol/mm2/s)
    // var k_i_GLUT2:  mM {init: 0.1094};
    var k_i_GLUT2: mM {init: 0.01};
    var k_o_GLUT2: mM {init: 1.6090};
    var k_io_GLUT2: mM2 {init: 1.2959};
    var kappa_GLUT2: pL_per_s {init: 0.0442};
    var PHI_GLUT2: dim;
    var v_GLUT2_raw: fmol_per_mm2_per_s;
    var v_GLUT2: fmol_per_mm2_per_s;
    PHI_GLUT2 = 1{dim}+c_Glc_i/k_i_GLUT2+c_Glc_o/k_o_GLUT2+c_Glc_i*c_Glc_o/k_io_GLUT2;
    v_GLUT2_raw = kappa_GLUT2/(PHI_GLUT2*area)*(c_Glc_i-c_Glc_o);
    v_GLUT2 = v_GLUT2_raw*Scale_GLUT2;
    // -------------------- SGLT1 model -----------------------
    var K_Na_gut: per_fmol {init: 0.0601};
    var K_Glc_gut: per_fmol {init: 2.4289};
    var K_Glc_i: per_fmol {init: 2.4289};
    var q_bar_Na_gut: dim;
    var q_bar_Glc_gut: dim;
    var q_bar_Glc_i: dim;
    var K_1_SGLT1: per_fmol {init: 3.66};
    var K_2_SGLT1: per_fmol {init: 330};
    var K_3_SGLT1: per_fmol {init: 321};
    var K_4_SGLT1: per_fmol {init: 321};
    var K_5_SGLT1: per_fmol {init: 905};
    var K_6_SGLT1: per_fmol {init: 0.314};
    q_Na_gut = c_Na_gut*W_gut;
    q_Glc_gut = c_Glc_gut*W_gut;
    q_Glc_i = c_Glc_i*W_i;
    q_bar_Na_gut = K_Na_gut*q_Na_gut;
    q_bar_Glc_gut = K_Glc_gut*q_Glc_gut;
    q_bar_Glc_i = K_Glc_i*q_Glc_i;
    var z1_SGLT1: dim {init: 0.3};
    var z2_SGLT1: dim {init: 0.7};
    var kappa_3_SGLT1: fmol_per_s {init: 0.156};
    var kappa_6_SGLT1: fmol_per_s {init: 9.562};
    var kappa_SGLT1: fmol_per_s {init: 3.5};
    var PHI_SGLT1: dim;
    var v_SGLT1_raw: fmol_per_mm2_per_s;
    var v_SGLT1: fmol_per_mm2_per_s;
    PHI_SGLT1 = ((exp(2{dim}*z1_SGLT1*u_e/RTF)+sqr(q_bar_Na_gut)*(K_1_SGLT1/K_2_SGLT1+K_1_SGLT1/K_3_SGLT1*q_bar_Glc_gut))*(sqr(q_bar_Na_i)*q_bar_Glc_i*exp(z2_SGLT1*u_e/RTF)+kappa_6_SGLT1/kappa_3_SGLT1)+(K_1_SGLT1/K_6_SGLT1+sqr(q_bar_Na_i)*(K_1_SGLT1/K_5_SGLT1+K_1_SGLT1/K_4_SGLT1*q_bar_Glc_i))*(sqr(q_bar_Na_gut)*q_bar_Glc_gut*exp(z2_SGLT1*u_e/RTF)+kappa_6_SGLT1/kappa_3_SGLT1*exp(2{dim}*u_e/RTF)))/(sqr(q_bar_Na_i)*q_bar_Glc_i);
    v_SGLT1_raw = kappa_SGLT1/(area*PHI_SGLT1)*(sqr(c_Na_gut/c_Nai)*(c_Glc_gut/c_Glc_i)-exp(2{dim}*u_e/RTF));
    v_SGLT1 = v_SGLT1_raw*Scale_SGLT1;
    // -------------------- NKE model -----------------------
    var z1_NKE: dim {init: 0.9450};
    var z2_NKE: dim;
    z2_NKE = z1_NKE-1{dim};
    q_Na_o = c_Nao*W_o;
    q_Na_i = c_Nai*W_i;
    q_K_o = c_Ko*W_o;
    q_K_i = c_Ki*W_i;
    q_ATP = c_ATP*W_i;
    q_ADP = c_ADP*W_i;
    q_Pi = c_Pi*W_i;
    q_H = c_H*W_i;
    var q_bar_Na_o: dim;
    var q_bar_Na_i: dim;
    var q_bar_K_o: dim;
    var q_bar_K_i: dim;
    var q_bar_ATP: dim;
    var q_bar_ADP: dim;
    var q_bar_Pi: dim;
    var q_bar_H: dim;
    var K_Ko: per_fmol {init: 0.0239};
    var K_Ki: per_fmol {init: 0.0239};
    var K_Nao: per_fmol {init: 0.0159};
    var K_Nai: per_fmol {init: 0.0159};
    var K_ATP: per_fmol {init: 45.06};
    var K_ADP: per_fmol {init: 0.0015};
    var K_Pi: per_fmol {init: 0.8673};
    var K_H: per_fmol {init: 0.8673};
    q_bar_Na_o = K_Nao*q_Na_o;
    q_bar_Na_i = K_Nai*q_Na_i;
    q_bar_K_o = K_Ko*q_K_o;
    q_bar_K_i = K_Ki*q_K_i;
    q_bar_ATP = K_ATP*q_ATP;
    q_bar_ADP = K_ADP*q_ADP;
    q_bar_Pi = K_Pi*q_Pi;
    q_bar_H = K_H*q_H;
    var A_NKE: dim;
    var B_NKE: dim;
    var C_NKE: dim;
    var D_NKE: dim;
    var Q_ATP_ratio: dim;
    var Delta_G: J_per_mol;
    Q_ATP_ratio = q_bar_ATP/(q_bar_ADP*q_bar_Pi*q_bar_H);
    Delta_G = -RT*ln(Q_ATP_ratio);
    A_NKE = pow(c_Nai/c_Nao, 3{dim})*Q_ATP_ratio-sqr(c_Ki/c_Ko)*exp(-u_e/RTF);
    B_NKE = pow(c_Nai/c_Nao, 3{dim})*Q_ATP_ratio*exp(z1_NKE*u_e/RTF)*(gamma_4+(gamma_5+1{dim}/(q_bar_Pi*q_bar_H))*sqr(q_bar_K_o));
    C_NKE = (gamma_1/(q_bar_Pi*q_bar_H)+gamma_2*pow(q_bar_Na_i, 3{dim})*q_bar_ATP/(q_bar_Pi*q_bar_H)+gamma_3*pow(q_bar_Na_i, 3{dim})*Q_ATP_ratio+B_NKE)*(((lambda_1+lambda_2)/q_bar_ADP+lambda_3*exp(-z1_NKE*u_e/RTF))/pow(q_bar_Na_o, 3{dim})+(lambda_4+lambda_5+q_bar_Pi*q_bar_H)/sqr(q_bar_K_o)*exp(-z1_NKE*u_e/RTF));
    D_NKE = gamma_2*lambda_1+gamma_5*lambda_4+(lambda_4+lambda_5)/(q_bar_Pi*q_bar_H)+gamma_3*(lambda_1+lambda_2)/q_bar_ADP+((lambda_1+lambda_2)/q_bar_ADP*exp(z1_NKE*u_e/RTF)+lambda_3)/pow(q_bar_Na_o, 3{dim})*(gamma_4+(gamma_5+1{dim}/(q_bar_Pi*q_bar_H))*sqr(q_bar_K_o));
    var q_tot: fmol {init: 1e0};
    var PHI_NKE: dim;
    var kappa_NKE: fmol_per_mm2_per_s;
    var v_NKE_raw: fmol_per_mm2_per_s;
    var v_NKE: fmol_per_mm2_per_s;
    kappa_NKE = kappa_6_NKE*K_6*q_tot/area;
    PHI_NKE = C_NKE-A_NKE*D_NKE;
    v_NKE_raw = kappa_NKE/PHI_NKE*A_NKE;
    v_NKE = v_NKE_raw*Scale_NKE;
    var lambda_1: dim;
    var lambda_2: dim;
    var lambda_3: dim;
    var lambda_4: dim;
    var lambda_5: dim;
    lambda_1 = kappa_6_NKE/kappa_1_NKE;
    lambda_2 = kappa_6_NKE/kappa_2_NKE;
    lambda_3 = kappa_6_NKE/kappa_3_NKE;
    lambda_4 = kappa_6_NKE/kappa_4_NKE;
    lambda_5 = kappa_6_NKE/kappa_5_NKE;
    var q_bar_1: dim;
    var q_bar_2: dim;
    var q_bar_3: dim;
    var q_bar_4: dim;
    var q_bar_5: dim;
    var q_bar_6: dim;
    var vv: dim;
    vv = v_NKE*area/kappa_6_NKE;
    q_bar_1 = ((lambda_1+lambda_2)/q_bar_ADP+lambda_3*exp(-z1_NKE*u_e/RTF)+(lambda_4+lambda_5+q_bar_Pi*q_bar_H)*pow(q_bar_Na_o, 3{dim})/sqr(q_bar_K_o)*exp(-z1_NKE*u_e/RTF))*vv/(q_bar_Pi*q_bar_H*pow(q_bar_Na_o, 3{dim})*A_NKE);
    q_bar_2 = q_bar_1*pow(q_bar_Na_i, 3{dim})*q_bar_ATP-lambda_1*vv;
    q_bar_3 = (q_bar_2-lambda_2*vv)/q_bar_ADP;
    q_bar_4 = (q_bar_3*exp(z1_NKE*u_e/RTF)-lambda_3*vv)/pow(q_bar_Na_o, 3{dim});
    q_bar_5 = q_bar_4*sqr(q_bar_K_o)-lambda_4*vv;
    q_bar_6 = (q_bar_5-lambda_5*vv)/(q_bar_Pi*q_bar_H);
    var q_1: fmol;
    var q_2: fmol;
    var q_3: fmol;
    var q_4: fmol;
    var q_5: fmol;
    var q_6: fmol;
    var K_1: per_fmol {init: 0.01673};
    var K_2: per_fmol {init: 4.477e3};
    var K_3: per_fmol {init: 46.64e3};
    var K_4: per_fmol {init: 720.6};
    var K_5: per_fmol {init: 1.607};
    var K_6: per_fmol {init: 30.25e3};
    q_1 = q_bar_1/K_1;
    q_2 = q_bar_2/K_2;
    q_3 = q_bar_3/K_3;
    q_4 = q_bar_4/K_4;
    q_5 = q_bar_5/K_5;
    q_6 = q_bar_6/K_6;
    var v_1: fmol_per_mm2_per_s;
    var v_2: fmol_per_mm2_per_s;
    var v_3: fmol_per_mm2_per_s;
    var v_4: fmol_per_mm2_per_s;
    var v_5: fmol_per_mm2_per_s;
    var v_6: fmol_per_mm2_per_s;
    var kappa_1_NKE: fmol_per_s {init: 2.839e3};
    var kappa_2_NKE: fmol_per_s {init: 51.10};
    var kappa_3_NKE: fmol_per_s {init: 469.3};
    var kappa_4_NKE: fmol_per_s {init: 619.1e3};
    var kappa_5_NKE: fmol_per_s {init: 35.87};
    var kappa_6_NKE: fmol_per_s {init: 868.4};
    v_1 = kappa_1_NKE/area*(q_bar_1*pow(q_bar_Na_i, 3{dim})*q_bar_ATP-q_bar_2);
    v_2 = kappa_2_NKE/area*(q_bar_2-q_bar_3*q_bar_ADP);
    v_3 = kappa_3_NKE/area*(q_bar_3*exp(z1_NKE*u_e/RTF)-q_bar_4*pow(q_bar_Na_o, 3{dim}));
    v_4 = kappa_4_NKE/area*(q_bar_4*sqr(q_bar_K_o)-q_bar_5);
    v_5 = kappa_5_NKE/area*(q_bar_5-q_bar_6*q_bar_Pi*q_bar_H);
    v_6 = kappa_6_NKE/area*(q_bar_6-q_bar_1*sqr(q_bar_K_i)*exp(z2_NKE*u_e/RTF));
    var gamma_1: dim;
    var gamma_2: dim;
    var gamma_3: dim;
    var gamma_4: dim;
    var gamma_5: dim;
    gamma_1 = K_6/K_1;
    gamma_2 = K_6/K_2;
    gamma_3 = K_6/K_3;
    gamma_4 = K_6/K_4;
    gamma_5 = K_6/K_5;
    var u_rev_NKE: J_per_C;
    u_rev_NKE = -RTF*ln(pow(c_Nai/c_Nao, 3{dim})*sqr(c_Ko/c_Ki)*Q_ATP_ratio);
    // -------------------- IKir model -----------------------
    //
    // Note that kappa_Kir (pL/s) x conc (mM=fmol/pL) /area (mm2) = surface flux (fmol/mm2/s)
    var z1_Kir: dim {init: 0};
    var z2_Kir: dim {init: 0};
    var z3_Kir: dim {init: 0};
    var z4_Kir: dim {init: -0.18};
    var z5_Kir: dim {init: 0};
    var z6_Kir: dim {init: -0.82};
    var k_i_Kir: mM {init: 1};
    var k_o_Kir: mM {init: 1};
    var PHI_Kir: dim;
    var kappa_Kir: pL_per_s {init: 1e-1};
    var v_Kir_raw: fmol_per_mm2_per_s;
    var v_Kir: fmol_per_mm2_per_s;
    PHI_Kir = exp((-z1_Kir+z2_Kir-z3_Kir)*u_e/RTF)*(1{dim}+c_Ki/k_i_Kir*exp((z1_Kir-z2_Kir)*u_e/RTF)+c_Ko/k_o_Kir*exp((z6_Kir-z5_Kir)*u_e/RTF));
    v_Kir_raw = kappa_Kir/(PHI_Kir*area)*(c_Ki-c_Ko*exp(-u_e/RTF));
    v_Kir = v_Kir_raw*Scale_Kir;
    var u_rev_Kir: J_per_C;
    u_rev_Kir = -RTF*ln(c_Ki/c_Ko);
  enddef;
enddef;
// #model
// reference: subject_type keyword; protein-modules
