def model vasalou_2010 as
  // A multiscale model to investigate circadian rhythmicity of pacemaker neurons in the suprachiasmatic nucleus
  //
  // Catherine Lloyd
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This model runs in both OpenCell and COR to replicate the published results (figure 2). This CellML model translation is based on the curated SBML model in the BioModels database (BIOMD0000000246.xml) which in turn was based on the original author's Matlab code. Note that in order to replicate figure 2 the model has to be run for at least 200 hours to allow the oscillations to stabilise (and for 500 hours to clearly see the stablisation).
  //
  // Model Structure
  //
  // ABSTRACT: The suprachiasmatic nucleus (SCN) of the hypothalamus is a multicellular system that drives daily rhythms in mammalian behavior and physiology. Although the gene regulatory network that produces daily oscillations within individual neurons is well characterized, less is known about the electrophysiology of the SCN cells and how firing rate correlates with circadian gene expression. We developed a firing rate code model to incorporate known electrophysiological properties of SCN pacemaker cells, including circadian dependent changes in membrane voltage and ion conductances. Calcium dynamics were included in the model as the putative link between electrical firing and gene expression. Individual ion currents exhibited oscillatory patterns matching experimental data both in current levels and phase relationships. VIP and GABA neurotransmitters, which encode synaptic signals across the SCN, were found to play critical roles in daily oscillations of membrane excitability and gene expression. Blocking various mechanisms of intracellular calcium accumulation by simulated pharmacological agents (nimodipine, IP3- and ryanodine-blockers) reproduced experimentally observed trends in firing rate dynamics and core-clock gene transcription. The intracellular calcium concentration was shown to regulate diverse circadian processes such as firing frequency, gene expression and system periodicity. The model predicted a direct relationship between firing frequency and gene expression amplitudes, demonstrated the importance of intracellular pathways for single cell behavior and provided a novel multiscale framework which captured characteristics of the SCN at both the electrophysiological and gene regulatory levels.
  //
  // The original paper reference is cited below:
  //
  // A multiscale model to investigate circadian rhythmicity of pacemaker neurons in the suprachiasmatic nucleus, Vasalou C, Henson MA, 2010, PLoS Computational Biology , 6, e1000706. PubMed ID: 20300645 (http://www.ncbi.nlm.nih.gov/pubmed/20300645)
  //
  // Schematic representation of the SCN neuron model
  //
  // Leloup and Goldbeter 2003 model for circadian oscillations in mammals involving interlocked negative and positive regulations of Per , Cry , Bmal1 , and Rev-Erb genes by their protein products.
  def unit nanoM_2_2 as
    unit nanoM {expo: 2.2};
  enddef;
  def unit joule_per_mole_kelvin as
    unit joule;
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1.0};
  enddef;
  def unit per_nanoM_0_2 as
    unit nanoM {expo: -0.2};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit microM as
    unit mole {pref: micro};
    unit litre {expo: -1.0};
  enddef;
  def unit nanoM as
    unit mole {pref: nano};
    unit litre {expo: -1.0};
  enddef;
  def unit mOnS as
    unit nanoS;
    unit milliohm;
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit picoA_2_5 as
    unit picoA {expo: 2.5};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit hertz_1_9 as
    unit hertz {expo: 1.9};
  enddef;
  def unit per_hour as
    unit hour {expo: -1.0};
  enddef;
  def unit nanoM_0_1 as
    unit nanoM {expo: 0.1};
  enddef;
  def unit per_nanoM2 as
    unit nanoM {expo: -2.0};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1.0};
  enddef;
  def unit nanoM_4_5 as
    unit nanoM {expo: 4.5};
  enddef;
  def unit per_milliM as
    unit milliM {expo: -1.0};
  enddef;
  def unit per_nanoF as
    unit farad {expo: -1.0, pref: nano};
  enddef;
  def unit per_microM as
    unit microM {expo: -1.0};
  enddef;
  def unit second_order_rate_constant as
    unit hour {expo: -1.0};
    unit nanoM {expo: -1.0};
  enddef;
  def unit nanoM_0_8_per_hour as
    unit nanoM {expo: 0.8};
    unit hour {expo: -1.0};
  enddef;
  def unit milliM as
    unit mole {pref: milli};
    unit litre {expo: -1.0};
  enddef;
  def unit per_nanoM as
    unit nanoM {expo: -1.0};
  enddef;
  def unit per_kelvin as
    unit kelvin {expo: -1.0};
  enddef;
  def unit flux as
    unit hour {expo: -1.0};
    unit nanoM;
  enddef;
  def unit hour as
    unit second {mult: 3600.0};
  enddef;
  def unit per_microM_per_hour as
    unit hour {expo: -1.0};
    unit microM {expo: -1.0};
  enddef;
  def unit first_order_rate_constant as
    unit hour {expo: -1.0};
  enddef;
  def unit gigaohm as
    unit ohm {pref: giga};
  enddef;
  def unit microM_per_hour as
    unit hour {expo: -1.0};
    unit microM;
  enddef;
  def unit nanoF as
    unit farad {pref: nano};
  enddef;
  def unit milliohm as
    unit ohm {pref: milli};
  enddef;

  def comp environment as
    var time: hour {pub: out};
  enddef;

  def comp membrane as
    var V_K: nanoM {pub: out};
    var fr: hertz {pub: out};
    var v_sPC: flux {pub: out};
    var Res: gigaohm;
    var V_rest: milliV;
    var V_reset: milliV;
    var V_theta: milliV {init: 20.0};
    var Cm: nanoF {init: 5.0};
    var R: joule_per_mole_kelvin {init: 8.314};
    var T: kelvin {init: 37};
    var T_abs: kelvin {init: 273.15};
    var T_room: kelvin {init: 22};
    var F: coulomb_per_mole {init: 96485};
    var alpha: dimensionless;
    var beta: dimensionless;
    var beta_a: dimensionless;
    var c: dimensionless;
    var P_Ca: per_milliM {init: 0.05};
    var P_K: per_milliM;
    var P_Na: per_milliM {init: 0.036};
    var P_Cl: per_milliM {init: 0.3};
    var v_PK: per_milliM {init: 1.9};
    var npk: dimensionless {init: -2.0};
    var K_PK: per_nanoM2 {init: 1.0};
    var V_R: gigaohm {init: 0.41};
    var K_R: milliV {init: 34.0};
    var Ca_ex: microM {init: 5.0};
    var Na_ex: milliM {init: 145.0};
    var K_ex: milliM {init: 1.0};
    var Cl_ex: milliM {init: 114.5};
    var Na_in: milliM;
    var K_in: milliM;
    var theta_Na: dimensionless;
    var theta_K: dimensionless;
    var E_Na_0: milliV {init: 45.0};
    var E_Na: milliV;
    var g_Na: nanoS {init: 36.0};
    var E_Ca: milliV;
    var g_Ca: nanoS;
    var g_K: nanoS;
    var g_K0: nanoS {init: 9.7};
    var v_gk: nanoS {init: 10.0};
    var K_gk: nanoM {init: 10.0};
    var g_KCa: nanoS;
    var v_KCa: nanoS {init: 3.0};
    var K_KCa: per_nanoM {init: 0.16};
    var nkca: dimensionless {init: -1.0};
    var g_L: nanoS;
    var E_L_0: milliV {init: -29.0};
    var E_L: milliV;
    var E_K_0: milliV {init: -97.0};
    var E_K: milliV;
    var g_ex: nanoS;
    var E_ex: milliV {init: 0.0};
    var v_ex1: nanoS {init: 105.0};
    var v_ex2: nanoS {init: 4.4};
    var K_ex1: picoA_2_5 {init: 574050000.0};
    var K_ex2: per_microM {init: 1.0};
    var nex1: dimensionless {init: 2.5};
    var nex2: dimensionless {init: -1.0};
    var g_inhib: nanoS {init: 12.3};
    var E_inhib: milliV;
    var GABA: nanoM;
    var GABA0: nanoM {init: 0.2};
    var v_GABA: nanoM {init: 19.0};
    var K_GABA: nanoM {init: 3.0};
    var Cl_in: milliM;
    var Cl0: milliM {init: 1.0};
    var v_Cl1: milliM {init: 15.5};
    var v_Cl2: milliM {init: 19.0};
    var K_Cl1: nanoM {init: 4.0};
    var K_Cl2: per_nanoM_0_2 {init: 1.0};
    var nCl: dimensionless {init: -0.2};
    var i_Na: picoA;
    var i_Na_abs: picoA;
    var i_Ca: picoA;
    var i_K: picoA;
    var i_KCa: picoA;
    var i_L: picoA;
    var i_ex: picoA;
    var i_inhib: picoA;
    var I_star: picoA;
    var R_star: milliohm;
    var tau_m: second;
    var theta: milliV;
    var psi: dimensionless;
    var k_q: per_kelvin {init: 8.75e-5};
    var k_MK: nanoM {init: 2.9};
    var V_MK: nanoM {init: 5.0};
    var V_b: nanoM {init: 2.0};
    var k_b: dimensionless {init: 2.0};
    var K_D: nanoM {init: 0.08};
    var v_sP0: flux {init: 1.0};
    var C_T: flux {init: 1.6};
    var nca: dimensionless {init: 2.2};
    var v_Ca: nanoS {init: 12.3};
    var K_Ca: nanoM_2_2 {init: 22.0};
    var K_C: nanoM {init: 0.15};
    var time: hour {pub: in};
    var Ca_in: microM {pub: in};
    var BC: nanoM {pub: in};
    var MP: nanoM {pub: in};
    var VIP: nanoM {pub: in};
    var CC: nanoM {pub: in};
    var CB: nanoM {pub: in};
    I_star = g_Na*E_Na+g_Ca*E_Ca+g_K*E_K+g_L*E_L+g_KCa*E_K-(g_inhib*E_inhib+g_ex*E_ex);
    R_star = 1.0{mOnS}/(g_Na+g_K+g_L+g_Ca+g_KCa-(g_inhib+g_ex));
    fr = -1.0{dimensionless}/(tau_m*ln((theta-R_star*I_star)/(V_reset-R_star*I_star)));
    tau_m = Cm*R_star;
    V_rest = R*(T+T_abs)/F*ln(psi)*1000.0{dimensionless};
    theta = V_rest+V_theta;
    V_reset = V_rest+4.0{milliV};
    psi = (sqrt(sqr(beta_a)-4{dimensionless}*alpha*c)-beta_a)/(2{dimensionless}*alpha);
    alpha = 4{dimensionless}*P_Ca*Ca_in*0.001{dimensionless}+P_K*K_in+P_Na*Na_in+P_Cl*Cl_ex;
    beta_a = P_K*K_in+P_Na*Na_in+P_Cl*Cl_ex-(P_K*K_ex+P_Na*Na_ex+P_Cl*Cl_in);
    c = -(P_K*K_ex+4{dimensionless}*P_Ca*Ca_ex*0.001{dimensionless}+P_Na*Na_ex+P_Cl*Cl_in);
    P_K = v_PK*pow(BC/1{nanoM}, npk)/(K_PK+pow(BC/1{nanoM}, npk));
    Res = V_R*V_rest/(K_R+V_rest);
    K_in = K_ex/theta_K;
    Na_in = Na_ex/theta_Na;
    theta_K = exp(E_K/(k_q*(T+T_abs)*1000.0{milliV}));
    theta_Na = exp(E_Na/(k_q*(T+T_abs)*1000.0{milliV}));
    E_K = E_K_0*(T+T_abs)/(T_room+T_abs);
    E_Na = E_Na_0*(T+T_abs)/(T_room+T_abs);
    E_L = E_L_0*(T+T_abs)/(T_room+T_abs);
    E_Ca = k_q*(T+T_abs)/2.0{dimensionless}*ln(Ca_ex/Ca_in)*1000.0{milliV};
    E_inhib = -k_q*(T+T_abs)*ln(Cl_ex/Cl_in)*1000.0{milliV};
    i_Na = g_Na*(V_rest-E_Na);
    i_Na_abs = sqrt(sqr(i_Na));
    g_K = g_K0+v_gk*MP/(K_gk+MP);
    i_K = g_K*(V_rest-E_K);
    g_Ca = v_Ca*pow(MP, nca)/(K_Ca+pow(MP, nca));
    i_Ca = g_Ca*(V_rest-E_Ca);
    g_KCa = v_KCa*pow(CC, nkca)/(K_KCa+pow(CC, nkca));
    i_KCa = g_KCa*(V_rest-E_K);
    g_L = 1{dimensionless}/Res;
    i_L = g_L*(V_rest-E_L);
    g_ex = v_ex1*pow(i_Na_abs, nex1)/(K_ex1+pow(i_Na_abs, nex1))+v_ex2*pow(Ca_in, nex2)/(K_ex2+pow(Ca_in, nex2));
    i_ex = g_ex*(V_rest-E_ex);
    i_inhib = g_inhib*(V_rest-E_inhib);
    GABA = GABA0+v_GABA*VIP/(K_GABA+VIP);
    beta = VIP/(VIP+K_D);
    v_sPC = v_sP0+C_T*CB/(K_C+CB);
    Cl_in = Cl0+v_Cl1*MP/(K_Cl1+MP)+v_Cl2*pow(GABA, nCl)/(K_Cl2+pow(GABA, nCl));
    V_K = V_MK*Ca_in/(k_MK+Ca_in)+V_b*beta/(k_b+beta);
  enddef;

  def comp Ca_in as
    var Ca_in: microM {init: 0.1, pub: out};
    var beta_IP3: dimensionless {init: 0.5};
    var Ca_store: nanoM {init: 0.1};
    var v0: microM_per_hour;
    var v1: microM_per_hour;
    var v2: microM_per_hour;
    var v3: microM_per_hour;
    var v_kk: per_microM_per_hour {init: 3.3};
    var v_v0: microM_per_hour {init: 0.09};
    var kf: per_hour {init: 0.001};
    var k: per_microM_per_hour;
    var nkk: dimensionless {init: 0.1};
    var nv0: dimensionless {init: 4.5};
    var m: dimensionless {init: 6.0};
    var n: dimensionless {init: 2.2};
    var p: dimensionless {init: 4.2};
    var v: dimensionless {init: 2.0};
    var K_kk: nanoM_0_1 {init: 0.02};
    var K_v0: nanoM_4_5 {init: 4.5};
    var K_2: microM {init: 5.0};
    var K_R: microM {init: 3.0};
    var K_A: microM {init: 0.67};
    var v_M1: microM_per_hour {init: 0.0003};
    var v_M2: microM_per_hour {init: 149.5};
    var v_M3: microM_per_hour {init: 400.0};
    var time: hour {pub: in};
    var MP: nanoM {pub: in};
    var CC: nanoM {pub: in};
    var BC: nanoM {pub: in};
    ode(Ca_in, time) = v0+v1+v3+kf*Ca_store-(v2+k*pow(Ca_in, v));
    ode(Ca_store, time) = v2-(v3+kf*Ca_store);
    k = v_kk*pow(CC, nkk)/(K_kk+pow(CC, nkk));
    v0 = v_v0*pow(BC, nv0)/(K_v0+pow(BC, nv0));
    v1 = v_M1*beta_IP3;
    v2 = v_M2*pow(Ca_in, n)/(pow(K_2, n)+pow(Ca_in, n));
    v3 = v_M3*pow(Ca_store, m)/(pow(K_R, m)+pow(Ca_store, m))*pow(Ca_in, p)/(pow(K_A, p)+pow(Ca_in, p));
  enddef;

  def comp VIP as
    var VIP: nanoM {init: 0.0, pub: out};
    var v_VIP: flux {init: 0.5};
    var K_VIP: hertz_1_9 {init: 15.0};
    var kd_VIP: nanoM_0_8_per_hour {init: 0.5};
    var nd_VIP: dimensionless {init: 0.2};
    var n_VIP: dimensionless {init: 1.9};
    var time: hour {pub: in};
    var fr: hertz {pub: in};
    ode(VIP, time) = v_VIP*pow(fr, n_VIP)/(K_VIP+pow(fr, n_VIP))-kd_VIP*pow(VIP, nd_VIP);
  enddef;

  def comp MP as
    var MP: nanoM {init: 2.8, pub: out};
    var vmP: flux {init: 1.1};
    var kdmp: first_order_rate_constant {init: 0.01};
    var KAP: nanoM {init: 0.6};
    var KmP: nanoM {init: 0.31};
    var n: dimensionless {pub: in};
    var BN: nanoM {pub: in};
    var time: hour {pub: in};
    var v_sPC: flux {pub: in};
    ode(MP, time) = v_sPC*pow(BN, n)/(pow(KAP, n)+pow(BN, n))-(vmP*MP/(KmP+MP)+kdmp*MP);
  enddef;

  def comp MC as
    var MC: nanoM {init: 2.0, pub: out};
    var vsC: flux {init: 1.1};
    var vmC: flux {init: 1.0};
    var kdmc: first_order_rate_constant {init: 0.01};
    var KAC: nanoM {init: 0.6};
    var KmC: nanoM {init: 0.4};
    var n: dimensionless {pub: in};
    var BN: nanoM {pub: in};
    var time: hour {pub: in};
    ode(MC, time) = vsC*pow(BN, n)/(pow(KAC, n)+pow(BN, n))-(vmC*MC/(KmC+MC)+kdmc*MC);
  enddef;

  def comp MB as
    var MB: nanoM {init: 7.94, pub: out};
    var vsB: flux {init: 1.0};
    var vmB: flux {init: 0.8};
    var kdmb: first_order_rate_constant {init: 0.01};
    var KIB: nanoM {init: 2.2};
    var KmB: nanoM {init: 0.4};
    var BN: nanoM {pub: in};
    var m: dimensionless {pub: in};
    var time: hour {pub: in};
    ode(MB, time) = vsB*pow(KIB, m)/(pow(KIB, m)+pow(BN, m))-(vmB*MB/(KmB+MB)+kdmb*MB);
  enddef;

  def comp PC as
    var PC: nanoM {init: 0.4, pub: out};
    var ksP: first_order_rate_constant {pub: in};
    var Kp: nanoM {pub: in};
    var Kdp: nanoM {pub: in};
    var k3: second_order_rate_constant {pub: in};
    var k4: first_order_rate_constant {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V1P: flux {pub: in};
    var V2P: flux {pub: in};
    var PCP: nanoM {pub: in};
    var PCC: nanoM {pub: in};
    var CC: nanoM {pub: in};
    var MP: nanoM {pub: in};
    var time: hour {pub: in};
    ode(PC, time) = ksP*MP+V2P*PCP/(Kdp+PCP)+k4*PCC-(V1P*PC/(Kp+PC)+k3*PC*CC+kdn*PC);
  enddef;

  def comp CC as
    var CC: nanoM {init: 12.0, pub: out};
    var ksC: first_order_rate_constant {pub: in};
    var Kp: nanoM {pub: in};
    var Kdp: nanoM {pub: in};
    var k3: second_order_rate_constant {pub: in};
    var k4: first_order_rate_constant {pub: in};
    var kdnc: first_order_rate_constant {pub: in};
    var V1C: flux {pub: in};
    var V2C: flux {pub: in};
    var CCP: nanoM {pub: in};
    var PC: nanoM {pub: in};
    var PCC: nanoM {pub: in};
    var MC: nanoM {pub: in};
    var time: hour {pub: in};
    ode(CC, time) = ksC*MC+V2C*CCP/(Kdp+CCP)+k4*PCC-(V1C*CC/(Kp+CC)+k3*PC*CC+kdnc*CC);
  enddef;

  def comp PCP as
    var PCP: nanoM {init: 0.13, pub: out};
    var vdPC: flux {pub: in};
    var Kp: nanoM {pub: in};
    var Kdp: nanoM {pub: in};
    var Kd: nanoM {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V1P: flux {pub: in};
    var V2P: flux {pub: in};
    var PC: nanoM {pub: in};
    var time: hour {pub: in};
    ode(PCP, time) = V1P*PC/(Kp+PC)-(V2P*PCP/(Kdp+PCP)+vdPC*PCP/(Kd+PCP)+kdn*PCP);
  enddef;

  def comp CCP as
    var CCP: nanoM {init: 9.0, pub: out};
    var vdCC: flux {pub: in};
    var Kp: nanoM {pub: in};
    var Kdp: nanoM {pub: in};
    var Kd: nanoM {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V1C: flux {pub: in};
    var V2C: flux {pub: in};
    var CC: nanoM {pub: in};
    var time: hour {pub: in};
    ode(CCP, time) = V1C*CC/(Kp+CC)-(V2C*CCP/(Kdp+CCP)+vdCC*CCP/(Kd+CCP)+kdn*CCP);
  enddef;

  def comp PCC as
    var PCC: nanoM {init: 1.26, pub: out};
    var Kp: nanoM {pub: in};
    var Kdp: nanoM {pub: in};
    var k1: first_order_rate_constant {pub: in};
    var k2: first_order_rate_constant {pub: in};
    var k3: second_order_rate_constant {pub: in};
    var k4: first_order_rate_constant {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V1PC: flux {pub: in};
    var V2PC: flux {pub: in};
    var PCCP: nanoM {pub: in};
    var PCN: nanoM {pub: in};
    var PC: nanoM {pub: in};
    var CC: nanoM {pub: in};
    var time: hour {pub: in};
    ode(PCC, time) = V2PC*PCCP/(Kdp+PCCP)+k3*PC*CC+k2*PCN-(V1PC*PCC/(Kp+PCC)+k4*PCC+k1*PCC+kdn*PCC);
  enddef;

  def comp PCN as
    var PCN: nanoM {init: 0.16, pub: out};
    var Kp: nanoM {pub: in};
    var Kdp: nanoM {pub: in};
    var k1: first_order_rate_constant {pub: in};
    var k2: first_order_rate_constant {pub: in};
    var k7: second_order_rate_constant {pub: in};
    var k8: first_order_rate_constant {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V3PC: flux {pub: in};
    var V4PC: flux {pub: in};
    var PCNP: nanoM {pub: in};
    var PCC: nanoM {pub: in};
    var BN: nanoM {pub: in};
    var IN: nanoM {pub: in};
    var time: hour {pub: in};
    ode(PCN, time) = V4PC*PCNP/(Kdp+PCNP)+k1*PCC+k8*IN-(V3PC*PCN/(Kp+PCN)+k2*PCN+k7*BN*PCN+kdn*PCN);
  enddef;

  def comp PCCP as
    var PCCP: nanoM {init: 0.2, pub: out};
    var Kp: nanoM {pub: in};
    var Kdp: nanoM {pub: in};
    var Kd: nanoM {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V1PC: flux {pub: in};
    var V2PC: flux {pub: in};
    var vdPCC: flux {pub: in};
    var PCC: nanoM {pub: in};
    var time: hour {pub: in};
    ode(PCCP, time) = V1PC*PCC/(Kp+PCC)-(V2PC*PCCP/(Kdp+PCCP)+vdPCC*PCCP/(Kd+PCCP)+kdn*PCCP);
  enddef;

  def comp PCNP as
    var PCNP: nanoM {init: 0.091, pub: out};
    var Kp: nanoM {pub: in};
    var Kdp: nanoM {pub: in};
    var Kd: nanoM {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V3PC: flux {pub: in};
    var V4PC: flux {pub: in};
    var vdPCN: flux {pub: in};
    var PCN: nanoM {pub: in};
    var time: hour {pub: in};
    ode(PCNP, time) = V3PC*PCN/(Kp+PCN)-(V4PC*PCNP/(Kdp+PCNP)+vdPCN*PCNP/(Kd+PCNP)+kdn*PCNP);
  enddef;

  def comp BC as
    var BC: nanoM {init: 2.41, pub: out};
    var Kp: nanoM {pub: in};
    var Kdp: nanoM {pub: in};
    var ksB: first_order_rate_constant {pub: in};
    var k5: first_order_rate_constant {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V1B: flux {pub: in};
    var V2B: flux {pub: in};
    var MB: nanoM {pub: in};
    var BCP: nanoM {pub: in};
    var BN: nanoM {pub: in};
    var time: hour {pub: in};
    ode(BC, time) = V2B*BCP/(Kdp+BCP)+k6*BN+ksB*MB-(V1B*BC/(Kp+BC)+k5*BC+kdn*BC);
  enddef;

  def comp BCP as
    var BCP: nanoM {init: 0.48, pub: out};
    var Kp: nanoM {pub: in};
    var Kdp: nanoM {pub: in};
    var Kd: nanoM {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V1B: flux {pub: in};
    var V2B: flux {pub: in};
    var vdBC: flux {pub: in};
    var BC: nanoM {pub: in};
    var time: hour {pub: in};
    ode(BCP, time) = V1B*BC/(Kp+BC)-(V2B*BCP/(Kdp+BCP)+vdBC*BCP/(Kd+BCP)+kdn*BCP);
  enddef;

  def comp BN as
    var BN: nanoM {init: 1.94, pub: out};
    var Kp: nanoM {pub: in};
    var Kdp: nanoM {pub: in};
    var k5: first_order_rate_constant {pub: in};
    var k6: first_order_rate_constant {pub: in};
    var k7: second_order_rate_constant {pub: in};
    var k8: first_order_rate_constant {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V3B: flux {pub: in};
    var V4B: flux {pub: in};
    var BNP: nanoM {pub: in};
    var BC: nanoM {pub: in};
    var PCN: nanoM {pub: in};
    var IN: nanoM {pub: in};
    var time: hour {pub: in};
    ode(BN, time) = V4B*BNP/(Kdp+BNP)+k5*BC+k8*IN-(V3B*BN/(Kp+BN)+k6*BN+k7*BN*PCN+kdn*BN);
  enddef;

  def comp BNP as
    var BNP: nanoM {init: 0.32, pub: out};
    var Kp: nanoM {pub: in};
    var Kdp: nanoM {pub: in};
    var Kd: nanoM {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var V3B: flux {pub: in};
    var V4B: flux {pub: in};
    var vdBN: flux {pub: in};
    var BN: nanoM {pub: in};
    var time: hour {pub: in};
    ode(BNP, time) = V3B*BN/(Kp+BN)-(V4B*BNP/(Kdp+BNP)+vdBN*BNP/(Kd+BNP)+kdn*BNP);
  enddef;

  def comp IN as
    var IN: nanoM {init: 0.05, pub: out};
    var Kd: nanoM {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var k7: second_order_rate_constant {pub: in};
    var k8: first_order_rate_constant {pub: in};
    var vdIN: flux {pub: in};
    var PCN: nanoM {pub: in};
    var BN: nanoM {pub: in};
    var time: hour {pub: in};
    ode(IN, time) = k7*BN*PCN-(k8*IN+vdIN*IN/(Kd+IN)+kdn*IN);
  enddef;

  def comp CB as
    var CB: nanoM {init: 0.12, pub: out};
    var K1CB: nanoM {init: 0.01};
    var K2CB: nanoM {init: 0.01};
    var WT: hour {init: 1.0};
    var vP: nanoM {init: 1.0};
    var V_K: nanoM {pub: in};
    var time: hour {pub: in};
    ode(CB, time) = (V_K*(1.0{nanoM}-CB)/(K1CB+1.0{nanoM}-CB)-vP*CB/(K2CB+CB))/WT;
  enddef;

  def comp model_parameters as
    var k1: first_order_rate_constant {init: 0.45, pub: out};
    var k2: first_order_rate_constant {init: 0.2, pub: out};
    var k3: second_order_rate_constant {init: 0.4, pub: out};
    var k4: first_order_rate_constant {init: 0.2, pub: out};
    var k5: first_order_rate_constant {init: 0.4, pub: out};
    var k6: first_order_rate_constant {init: 0.2, pub: out};
    var k7: second_order_rate_constant {init: 0.5, pub: out};
    var k8: first_order_rate_constant {init: 0.1, pub: out};
    var kdnc: first_order_rate_constant {init: 0.12, pub: out};
    var kdn: first_order_rate_constant {init: 0.01, pub: out};
    var ksB: first_order_rate_constant {init: 0.12, pub: out};
    var ksC: first_order_rate_constant {init: 1.6, pub: out};
    var ksP: first_order_rate_constant {init: 0.6, pub: out};
    var m: dimensionless {init: 2.0, pub: out};
    var n: dimensionless {init: 4.0, pub: out};
    var Kd: nanoM {init: 0.3, pub: out};
    var Kdp: nanoM {init: 0.1, pub: out};
    var Kp: nanoM {init: 0.1, pub: out};
    var V1C: flux {init: 0.6, pub: out};
    var V1P: flux {init: 0.4, pub: out};
    var V1B: flux {init: 0.5, pub: out};
    var V2B: flux {init: 0.1, pub: out};
    var V3B: flux {init: 0.5, pub: out};
    var V4B: flux {init: 0.2, pub: out};
    var V1PC: flux {init: 0.4, pub: out};
    var V2C: flux {init: 0.1, pub: out};
    var V2P: flux {init: 0.3, pub: out};
    var V2PC: flux {init: 0.1, pub: out};
    var V3PC: flux {init: 0.4, pub: out};
    var V4PC: flux {init: 0.1, pub: out};
    var vdBC: flux {init: 0.5, pub: out};
    var vdBN: flux {init: 0.6, pub: out};
    var vdCC: flux {init: 0.7, pub: out};
    var vdIN: flux {init: 0.8, pub: out};
    var vdPC: flux {init: 0.7, pub: out};
    var vdPCC: flux {init: 0.7, pub: out};
    var vdPCN: flux {init: 0.7, pub: out};
  enddef;
  def map between BN and MC for
    vars BN and BN;
  enddef;
  def map between BN and MP for
    vars BN and BN;
  enddef;
  def map between environment and BN for
    vars time and time;
  enddef;
  def map between model_parameters and PCN for
    vars V4PC and V4PC;
    vars kdn and kdn;
    vars V3PC and V3PC;
    vars k2 and k2;
    vars k8 and k8;
    vars k1 and k1;
    vars k7 and k7;
    vars Kdp and Kdp;
    vars Kp and Kp;
  enddef;
  def map between membrane and CB for
    vars V_K and V_K;
  enddef;
  def map between CC and PCC for
    vars CC and CC;
  enddef;
  def map between CCP and CC for
    vars CCP and CCP;
  enddef;
  def map between PCC and PCCP for
    vars PCC and PCC;
  enddef;
  def map between MC and CC for
    vars MC and MC;
  enddef;
  def map between model_parameters and IN for
    vars kdn and kdn;
    vars Kd and Kd;
    vars k8 and k8;
    vars vdIN and vdIN;
    vars k7 and k7;
  enddef;
  def map between CC and membrane for
    vars CC and CC;
  enddef;
  def map between environment and MP for
    vars time and time;
  enddef;
  def map between PC and PCC for
    vars PC and PC;
  enddef;
  def map between PCC and CC for
    vars PCC and PCC;
  enddef;
  def map between environment and PC for
    vars time and time;
  enddef;
  def map between membrane and VIP for
    vars fr and fr;
  enddef;
  def map between CC and Ca_in for
    vars CC and CC;
  enddef;
  def map between BC and BN for
    vars BC and BC;
  enddef;
  def map between BC and BCP for
    vars BC and BC;
  enddef;
  def map between environment and Ca_in for
    vars time and time;
  enddef;
  def map between PC and PCP for
    vars PC and PC;
  enddef;
  def map between CB and membrane for
    vars CB and CB;
  enddef;
  def map between environment and CCP for
    vars time and time;
  enddef;
  def map between PCNP and PCN for
    vars PCNP and PCNP;
  enddef;
  def map between BN and PCN for
    vars BN and BN;
  enddef;
  def map between MP and Ca_in for
    vars MP and MP;
  enddef;
  def map between PCCP and PCC for
    vars PCCP and PCCP;
  enddef;
  def map between environment and PCC for
    vars time and time;
  enddef;
  def map between environment and BC for
    vars time and time;
  enddef;
  def map between PC and CC for
    vars PC and PC;
  enddef;
  def map between environment and IN for
    vars time and time;
  enddef;
  def map between BNP and BN for
    vars BNP and BNP;
  enddef;
  def map between model_parameters and CC for
    vars kdnc and kdnc;
    vars k3 and k3;
    vars V2C and V2C;
    vars ksC and ksC;
    vars V1C and V1C;
    vars k4 and k4;
    vars Kdp and Kdp;
    vars Kp and Kp;
  enddef;
  def map between PCN and PCNP for
    vars PCN and PCN;
  enddef;
  def map between PCN and PCC for
    vars PCN and PCN;
  enddef;
  def map between BN and BNP for
    vars BN and BN;
  enddef;
  def map between IN and BN for
    vars IN and IN;
  enddef;
  def map between environment and MC for
    vars time and time;
  enddef;
  def map between CC and PC for
    vars CC and CC;
  enddef;
  def map between model_parameters and PCNP for
    vars vdPCN and vdPCN;
    vars V4PC and V4PC;
    vars kdn and kdn;
    vars V3PC and V3PC;
    vars Kd and Kd;
    vars Kdp and Kdp;
    vars Kp and Kp;
  enddef;
  def map between Ca_in and membrane for
    vars Ca_in and Ca_in;
  enddef;
  def map between BN and MB for
    vars BN and BN;
  enddef;
  def map between PCC and PCN for
    vars PCC and PCC;
  enddef;
  def map between PCN and BN for
    vars PCN and PCN;
  enddef;
  def map between model_parameters and MP for
    vars n and n;
  enddef;
  def map between PCN and IN for
    vars PCN and PCN;
  enddef;
  def map between model_parameters and MB for
    vars m and m;
  enddef;
  def map between model_parameters and PCC for
    vars kdn and kdn;
    vars V2PC and V2PC;
    vars k3 and k3;
    vars k2 and k2;
    vars k1 and k1;
    vars k4 and k4;
    vars Kdp and Kdp;
    vars Kp and Kp;
    vars V1PC and V1PC;
  enddef;
  def map between PCP and PC for
    vars PCP and PCP;
  enddef;
  def map between BN and IN for
    vars BN and BN;
  enddef;
  def map between model_parameters and BN for
    vars k5 and k5;
    vars V3B and V3B;
    vars kdn and kdn;
    vars k6 and k6;
    vars k8 and k8;
    vars k7 and k7;
    vars Kdp and Kdp;
    vars Kp and Kp;
    vars V4B and V4B;
  enddef;
  def map between environment and BCP for
    vars time and time;
  enddef;
  def map between membrane and MP for
    vars v_sPC and v_sPC;
  enddef;
  def map between model_parameters and BCP for
    vars kdn and kdn;
    vars Kd and Kd;
    vars V2B and V2B;
    vars Kdp and Kdp;
    vars Kp and Kp;
    vars V1B and V1B;
    vars vdBC and vdBC;
  enddef;
  def map between model_parameters and PCCP for
    vars kdn and kdn;
    vars V2PC and V2PC;
    vars Kd and Kd;
    vars vdPCC and vdPCC;
    vars Kdp and Kdp;
    vars Kp and Kp;
    vars V1PC and V1PC;
  enddef;
  def map between model_parameters and BNP for
    vars V3B and V3B;
    vars vdBN and vdBN;
    vars kdn and kdn;
    vars Kd and Kd;
    vars Kdp and Kdp;
    vars Kp and Kp;
    vars V4B and V4B;
  enddef;
  def map between MP and PC for
    vars MP and MP;
  enddef;
  def map between environment and MB for
    vars time and time;
  enddef;
  def map between environment and PCCP for
    vars time and time;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between PCC and PC for
    vars PCC and PCC;
  enddef;
  def map between BC and Ca_in for
    vars BC and BC;
  enddef;
  def map between model_parameters and MC for
    vars n and n;
  enddef;
  def map between environment and VIP for
    vars time and time;
  enddef;
  def map between VIP and membrane for
    vars VIP and VIP;
  enddef;
  def map between model_parameters and PC for
    vars kdn and kdn;
    vars ksP and ksP;
    vars V1P and V1P;
    vars k3 and k3;
    vars V2P and V2P;
    vars k4 and k4;
    vars Kdp and Kdp;
    vars Kp and Kp;
  enddef;
  def map between CC and CCP for
    vars CC and CC;
  enddef;
  def map between environment and PCP for
    vars time and time;
  enddef;
  def map between environment and CC for
    vars time and time;
  enddef;
  def map between MB and BC for
    vars MB and MB;
  enddef;
  def map between BN and BC for
    vars BN and BN;
  enddef;
  def map between IN and PCN for
    vars IN and IN;
  enddef;
  def map between environment and CB for
    vars time and time;
  enddef;
  def map between environment and PCN for
    vars time and time;
  enddef;
  def map between MP and membrane for
    vars MP and MP;
  enddef;
  def map between BC and membrane for
    vars BC and BC;
  enddef;
  def map between model_parameters and PCP for
    vars kdn and kdn;
    vars vdPC and vdPC;
    vars V1P and V1P;
    vars Kd and Kd;
    vars V2P and V2P;
    vars Kdp and Kdp;
    vars Kp and Kp;
  enddef;
  def map between environment and PCNP for
    vars time and time;
  enddef;
  def map between BCP and BC for
    vars BCP and BCP;
  enddef;
  def map between model_parameters and CCP for
    vars kdn and kdn;
    vars vdCC and vdCC;
    vars Kd and Kd;
    vars V2C and V2C;
    vars V1C and V1C;
    vars Kdp and Kdp;
    vars Kp and Kp;
  enddef;
  def map between environment and BNP for
    vars time and time;
  enddef;
  def map between model_parameters and BC for
    vars k5 and k5;
    vars kdn and kdn;
    vars k6 and k6;
    vars V2B and V2B;
    vars Kdp and Kdp;
    vars Kp and Kp;
    vars ksB and ksB;
    vars V1B and V1B;
  enddef;
enddef;
