def model KAPELA_MODEL as
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit M {pref: milli};
  enddef;
  def unit nM as
    unit M {pref: nano};
  enddef;
  def unit Jscm2 as
    unit joule;
    unit second;
    unit cm2;
  enddef;
  def unit nmol2_per_Jscm2 as
    unit mole {expo: 2, pref: nano};
    unit Jscm2 {expo: -1};
  enddef;
  def unit cm2_per_mole as
    unit cm2;
    unit per_mole;
  enddef;
  def unit per_ms as
    unit ms {expo: -1};
  enddef;
  def unit per_mM2_per_ms as
    unit mM {expo: -2};
    unit per_ms;
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit per_ms;
  enddef;
  def unit per_mM_per_ms as
    unit mM {expo: -1};
    unit per_ms;
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit nS_per_pF as
    unit nS;
    unit pF {expo: -1};
  enddef;
  def unit per_mole as
    unit mole {expo: -1};
  enddef;
  def unit pcoulomb_per_s as
    unit coulomb {pref: pico};
    unit per_sec;
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit per_mole;
  enddef;
  def unit per_sec as
    unit second {expo: -1};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit pF as
    unit farad {pref: pico};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit mM2 as
    unit mM {expo: 2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit cm2 as
    unit cm {expo: 2};
  enddef;
  def unit per_cm2 as
    unit cm2 {expo: -1};
  enddef;
  def unit pF_per_cm2 as
    unit pF;
    unit per_cm2;
  enddef;
  def unit cm_per_sec as
    unit cm;
    unit per_sec;
  enddef;
  def unit mJ_per_mol_per_K as
    unit joule {pref: milli};
    unit per_mole;
    unit kelvin {expo: -1};
  enddef;
  def unit pA as
    unit ampere {pref: pico};
  enddef;
  def unit pA_per_pF as
    unit pA;
    unit pF {expo: -1};
  enddef;
  def unit cm3 as
    unit cm {expo: 3};
  enddef;
  def unit cm3_per_sec as
    unit cm3;
    unit per_sec;
  enddef;
  def unit pL as
    unit liter {pref: pico};
  enddef;
  // Environnement/////////////////////////////////////////////////////////////////////////////////////////

  def comp environment as
    var t: ms {pub: out};
    var temp: celsius {init: 20};
    var tempK: kelvin {pub: out};
    var F: coulomb_per_mole {init: 96487, pub: out};
    var R: mJ_per_mol_per_K {init: 8341.0, pub: out};
    var RT_F: mV {pub: out};
    tempK = (temp+273.15{celsius})*1{kelvin}/1{celsius};
    RT_F = R*tempK/F;
  enddef;

  def comp membrane as
    var Vm: mV {init: -59.4, pub: out};
    var t: ms {pub: in};
    var Cm: pF {init: 25.0, pub: out};
    var Am: cm2 {pub: out};
    var I_VOCC: pA {pub: in};
    var I_SOC: pA {pub: in};
    var I_NCX: pA {pub: in};
    var I_PMCA: pA {pub: in};
    var I_NSC: pA {pub: in};
    var I_KV: pA {pub: in};
    var I_BKCA: pA {pub: in};
    var I_KATP: pA {pub: in};
    var I_CLCA: pA {pub: in};
    var I_NAK: pA {pub: in};
    var I_total_membrane: pA;
    Am = Cm/1e6{pF_per_cm2};
    // Area Mb
    I_total_membrane = I_VOCC+I_KV+I_BKCA+I_KATP+I_CLCA+I_SOC+I_NCX+I_PMCA+I_NSC+I_NAK;
    ode(Vm, t) = -I_total_membrane/Cm;
  enddef;

  def comp RYANODINE as
    var t: ms {pub: in};
    var R00: dimensionless;
    var R01: dimensionless {init: 0.9955};
    var R10: dimensionless {init: 0.0033, pub: out};
    var R11: dimensionless {init: 4.0e-6};
    var Ca_i: mM {pub: in};
    var Kr1: per_mM2_per_ms {init: 2500.0};
    var Kr2: per_mM_per_ms {init: 1.05};
    var K_r1: per_ms {init: 0.0076};
    var K_r2: per_ms {init: 0.084};
    R00 = 1{dimensionless}-R01-R10-R11;
    ode(R01, t) = Kr2*Ca_i*R00+K_r1*R11-(K_r2+Kr1*sqr(Ca_i))*R01;
    ode(R10, t) = Kr1*sqr(Ca_i)*R00-(K_r1+Kr2*Ca_i)*R10+K_r2*R11;
    ode(R11, t) = Kr2*Ca_i*R10-(K_r1+K_r2)*R11+Kr1*sqr(Ca_i)*R01;
  enddef;

  def comp calcium_dynamics as
    var Ca_i: mM {init: 6.8e-5, pub: out};
    var Ca_u: mM {init: 0.660, pub: out};
    var Ca_o: mM {init: 2.000, pub: out};
    var Ca_r: mM {init: 0.570, pub: out};
    var t: ms {pub: in};
    var I_Ca_totalmembrane: pA {pub: out};
    var I_SOC_Ca: pA {pub: in};
    var I_VOCC: pA {pub: in};
    var I_NCX: pA {pub: in};
    var I_PMCA: pA {pub: in};
    var I_CANSC: pA {pub: in};
    var I_rel: pA {pub: out};
    var I_IP3: pA {pub: in};
    var z_Ca: dimensionless {init: 2.0, pub: out};
    var vol_Ca: pL {init: 0.7, pub: out};
    var vol_u: pL {init: 0.07};
    var vol_r: pL {init: 0.007};
    var R10: dimensionless {pub: in};
    var Rleak: dimensionless {init: 1.07e-5};
    var F: coulomb_per_mole {pub: in};
    var tau_rel: ms {init: 0.0333};
    var tau_tr: ms {init: 1000.0};
    var I_tr: pA {pub: out};
    var CSQN_bar: mM {init: 15.0, pub: out};
    var K_CSQN: mM {init: 0.800, pub: out};
    var S_CM_Ca: mM;
    var S_CM_bar: mM {init: 0.1};
    var K_d: mM {init: 2.60e-4};
    var B_F: mM {init: 0.1};
    var K_dB: mM {init: 5.29830e-4};
    var I_SERCA: pA;
    var I_SERCA_bar: pA {init: 6.68};
    var Kmup: mM {init: 1.0e-3};
    S_CM_Ca = S_CM_bar*(1{dimensionless}-K_d/(K_d+Ca_i));
    I_SERCA = I_SERCA_bar*Ca_i/(Ca_i+Kmup);
    I_rel = (sqr(R10)+Rleak)*(Ca_r-Ca_i)*z_Ca*F*vol_r/tau_rel;
    I_tr = (Ca_u-Ca_r)*z_Ca*F*vol_u/tau_tr;
    I_Ca_totalmembrane = I_SOC_Ca+I_VOCC-2{dimensionless}*I_NCX+I_PMCA+I_CANSC;
    ode(Ca_i, t) = -(I_Ca_totalmembrane+I_SERCA-I_rel-I_IP3)/(z_Ca*F*vol_Ca)/(1{dimensionless}+S_CM_bar*K_d/sqr(K_d+Ca_i)+B_F*K_dB/sqr(K_dB+Ca_i));
    ode(Ca_u, t) = (I_SERCA-I_tr-I_IP3)/(z_Ca*F*vol_u);
    ode(Ca_r, t) = (I_tr-I_rel)/(z_Ca*F*vol_r)/(1{dimensionless}+CSQN_bar*K_CSQN/sqr(K_CSQN+Ca_r));
  enddef;

  def comp sodium_dynamics as
    var Na_i: mM {init: 8.4, pub: out};
    var Na_o: mM {init: 140.0, pub: out};
    var t: ms {pub: in};
    var I_Na_totalmembrane: pA;
    var I_NAK: pA {pub: in};
    var I_NCX: pA {pub: in};
    var I_NAKCL_NA: pA {pub: in};
    var I_SOC_Na: pA {pub: in};
    var I_NANSC: pA {pub: in};
    var F: coulomb_per_mole {pub: in};
    var vol_i: pL {pub: in};
    I_Na_totalmembrane = I_NAKCL_NA+I_SOC_Na+3{dimensionless}*I_NAK+3{dimensionless}*I_NCX+I_NANSC;
    ode(Na_i, t) = -I_Na_totalmembrane/(F*vol_i);
  enddef;

  def comp potassium_dynamics as
    var K_i: mM {init: 140.0, pub: out};
    var K_o: mM {init: 5.0, pub: out};
    var t: ms {pub: in};
    var I_K_totalmembrane: pA;
    var I_NAKCL_K: pA {pub: in};
    var I_KV: pA {pub: in};
    var I_BKCA: pA {pub: in};
    var I_KNSC: pA {pub: in};
    var I_KATP: pA {pub: in};
    var I_NAK: pA {pub: in};
    var F: coulomb_per_mole {pub: in};
    var vol_i: pL {pub: in};
    I_K_totalmembrane = I_NAKCL_K+I_KV+I_BKCA+I_KNSC+I_KATP-2{dimensionless}*I_NAK;
    ode(K_i, t) = -I_K_totalmembrane/(F*vol_i);
  enddef;

  def comp chlore_dynamics as
    var Cl_i: mM {init: 59.4, pub: out};
    var Cl_o: mM {init: 129.0, pub: out};
    var t: ms {pub: in};
    var I_Cl_totalmembrane: pA;
    var I_NAKCL_CL: pA {pub: in};
    var I_CLCA: pA {pub: in};
    var F: coulomb_per_mole {pub: in};
    var vol_i: pL {pub: in};
    var z_Cl: dimensionless {init: -1.0, pub: out};
    I_Cl_totalmembrane = I_NAKCL_CL+I_CLCA;
    ode(Cl_i, t) = -I_Cl_totalmembrane/(z_Cl*F*vol_i);
  enddef;

  def comp NAKCL as
    var t: ms {pub: in};
    var I_NAKCL_CL: pA {pub: out};
    var I_NAKCL_NA: pA {pub: out};
    var I_NAKCL_K: pA {pub: out};
    var Rnakcl_gmpc: dimensionless;
    var R_value1: mM {init: 6.4e-3};
    var c_GMP: mM {pub: in};
    var Am: cm2 {pub: in};
    var F: coulomb_per_mole {pub: in};
    var R: mJ_per_mol_per_K {pub: in};
    var tempK: kelvin {pub: in};
    var Lnakcl: nmol2_per_Jscm2 {init: 1.79e-8};
    var K_o: mM {pub: in};
    var K_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Na_i: mM {pub: in};
    var Cl_o: mM {pub: in};
    var Cl_i: mM {pub: in};
    var Z_Na: dimensionless {init: 1.0};
    var Z_K: dimensionless {init: 1.0};
    var z_Cl: dimensionless {pub: in};
    Rnakcl_gmpc = 1{dimensionless}+3.5{dimensionless}*c_GMP/(c_GMP+R_value1);
    I_NAKCL_CL = -1{M}/1{nM}*Rnakcl_gmpc*z_Cl*Am*Lnakcl*R*F*tempK*ln(Na_o*K_o/(Na_i*K_i)*sqr(Cl_o/Cl_i));
    I_NAKCL_NA = -0.5{dimensionless}*I_NAKCL_CL;
    I_NAKCL_K = I_NAKCL_NA;
  enddef;

  def comp SOC as
    var I_SOC: pA {pub: out};
    var I_SOC_Ca: pA {pub: out};
    var I_SOC_Na: pA {pub: out};
    var g_SOC_Ca: nS {init: 0.0083};
    var g_SOC_Na: nS {init: 0.0575};
    var P_SOC: dimensionless {pub: out};
    var Vm: mV {pub: in};
    var E_Ca: mV {pub: out};
    var E_Na: mV {pub: out};
    var RT_F: mV {pub: in};
    var z_Ca: dimensionless {pub: in};
    var z_Na: dimensionless {init: 1.0};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    var Ca_u: mM {pub: in};
    E_Ca = RT_F/z_Ca*ln(Ca_o/Ca_i);
    E_Na = RT_F/z_Na*ln(Na_o/Na_i);
    P_SOC = pow(1{dimensionless}+Ca_u/0.1{mM}, -1{dimensionless});
    I_SOC_Na = g_SOC_Na*P_SOC*(Vm-E_Na);
    I_SOC_Ca = g_SOC_Ca*P_SOC*(Vm-E_Ca);
    I_SOC = I_SOC_Ca+I_SOC_Na;
  enddef;

  def group as encapsulation for
    comp VOCC incl
      comp Dl_VOCC;
      comp Fl_VOCC;
    endcomp;
  enddef;

  def comp VOCC as
    var Vm: mV {priv: out, pub: in};
    var t: ms {priv: out, pub: in};
    var I_VOCC: pA {pub: out};
    var Am: cm2 {pub: in};
    var P_VOCC: cm_per_sec {init: 1.88e-5};
    var Dl: dimensionless {priv: in};
    var Fl: dimensionless {priv: in};
    var z_Ca: dimensionless {pub: in};
    var F: coulomb_per_mole {pub: in};
    var RT_F: mV {pub: in};
    // var tempK: kelvin {pub: in};
    var Ca_i: mM {pub: in};
    var Ca_o: mM {pub: in};
    I_VOCC = sel
      case Vm == 0{mV}:
        1e6{nM}/1{mM}*Am*P_VOCC*Dl*Fl*z_Ca*F*(Ca_i-Ca_o);
      otherwise:
        1e6{nM}/1{mM}*Am*P_VOCC*Dl*Fl*Vm*z_Ca*z_Ca*F/RT_F*(Ca_o-Ca_i*exp(Vm*z_Ca*z_Ca/RT_F))/(1{dimensionless}-exp(Vm*z_Ca/RT_F));
    endsel;
  enddef;

  def comp Dl_VOCC as
    var Vm: mV {pub: in};
    var t: ms {pub: in};
    var Dl: dimensionless {init: 0.000779, pub: out};
    var Dl_bar: dimensionless;
    var tau_Dl: ms;
    Dl_bar = 1{dimensionless}/(1{dimensionless}+exp(-Vm/8.3{mV}));
    tau_Dl = 2.5{ms}*exp(-sqr((Vm+40{mV})/30{mV}))+1.15{ms};
    ode(Dl, t) = (Dl_bar-Dl)/tau_Dl;
  enddef;

  def comp Fl_VOCC as
    var Vm: mV {pub: in};
    var t: ms {pub: in};
    var Fl: dimensionless {init: 0.8713, pub: out};
    var Fl_bar: dimensionless;
    var tau_Fl: ms;
    Fl_bar = 1{dimensionless}/(1{dimensionless}+exp((Vm+42{mV})/9.1{mV}));
    tau_Fl = 65{ms}*exp(-sqr((Vm+35{mV})/25{mV}))+45{ms};
    ode(Fl, t) = (Fl_bar-Fl)/tau_Fl;
  enddef;

  def comp NCX as
    var I_NCX: pA {pub: out};
    var g_NCX: nS {init: 0.487e-3, pub: out};
    var R_NCXcGMP: mV {pub: out};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var Ca_o: mM {pub: in};
    var phi_F: dimensionless {pub: out};
    var c_GMP: mM {pub: in};
    var Ca_i: mM {pub: in};
    var phi_R: dimensionless {pub: out};
    var d_NCX: dimensionless {init: 0.0003, pub: out};
    var gamma: dimensionless {init: 0.45, pub: out};
    var Vm: mV {pub: in};
    var RT_F: mV {pub: in};
    phi_F = exp(gamma*Vm/RT_F);
    phi_R = exp((gamma-1{dimensionless})*Vm/RT_F);
    R_NCXcGMP = 1{mV}+0.55{mV}*c_GMP/(c_GMP+45e-3{mM});
    I_NCX = g_NCX*R_NCXcGMP*(pow(Na_i, 3{dimensionless})*Ca_o*phi_F-pow(Na_o, 3{dimensionless})*Ca_i*phi_R)/(pow(1{mM}, 4{dimensionless})+d_NCX*(pow(Na_o, 3{dimensionless})*Ca_i+pow(Na_i, 3{dimensionless})*Ca_o));
  enddef;

  def comp PMCA as
    var I_PMCA: pA {pub: out};
    var I_PMCA_bar: pA {init: 5.37, pub: out};
    var Ca_i: mM {pub: in};
    var K_mPMCA: mM {init: 0.170e-3, pub: out};
    I_PMCA = I_PMCA_bar*Ca_i/(Ca_i+K_mPMCA);
  enddef;

  def comp NSC as
    var Vm: mV {pub: in};
    var I_NSC: pA {pub: out};
    var I_NANSC: pA {pub: out};
    var I_CANSC: pA {pub: out};
    var I_KNSC: pA {pub: out};
    var Am: cm2 {pub: in};
    var DAG: mM {pub: in};
    var Knsc: mM {init: 3.0e-3};
    var Dnscmin: dimensionless {init: 0.0244};
    var Ponsc: dimensionless {pub: out};
    var Pnansc: cm_per_sec {init: 5.11e-7};
    var Na_i: mM {pub: in};
    var Na_o: mM {pub: in};
    var F: coulomb_per_mole {pub: in};
    var RT_F: mV {pub: in};
    var Pknsc: cm_per_sec {pub: out};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var z_Ca: dimensionless {pub: in};
    var Pcansc: cm_per_sec {pub: out};
    var Ca_o: mM {pub: in};
    var Ca_i: mM {pub: in};
    Ponsc = 0.43{dimensionless}+0.57{dimensionless}/(1{dimensionless}+exp(-(Vm-47.12{mV})/24.24{mV}));
    Pknsc = 1.06{dimensionless}*Pnansc;
    Pcansc = 4.54{dimensionless}*Pnansc;
    I_NANSC = sel
      case Vm == 0{mV}:
        1e6{nM}/1{mM}*Am*(DAG/(DAG+Knsc)+Dnscmin)*Ponsc*Pnansc*F*(Na_i-Na_o);
      otherwise:
        1e6{nM}/1{mM}*Am*(DAG/(DAG+Knsc)+Dnscmin)*Ponsc*Pnansc*Vm*F/RT_F*(Na_o-Na_i*exp(Vm/RT_F))/(1{dimensionless}-exp(Vm/RT_F));
    endsel;
    I_KNSC = sel
      case Vm == 0{mV}:
        1e6{nM}/1{mM}*Am*(DAG/(DAG+Knsc)+Dnscmin)*Ponsc*Pknsc*F*(K_i-K_o);
      otherwise:
        1e6{nM}/1{mM}*Am*(DAG/(DAG+Knsc)+Dnscmin)*Ponsc*Pknsc*Vm*F/RT_F*(K_o-K_i*exp(Vm/RT_F))/(1{dimensionless}-exp(Vm/RT_F));
    endsel;
    I_CANSC = sel
      case Vm == 0{mV}:
        1e6{nM}/1{mM}*Am*Dnscmin*Ponsc*Pcansc*z_Ca*F*(Ca_i-Ca_o);
      otherwise:
        1e6{nM}/1{mM}*Am*Dnscmin*Ponsc*Pcansc*Vm*z_Ca*z_Ca*F/RT_F*(Ca_o-Ca_i*exp(z_Ca*Vm/RT_F))/(1{dimensionless}-exp(z_Ca*Vm/RT_F));
    endsel;
    I_NSC = I_NANSC+I_KNSC+I_CANSC;
  enddef;

  def group as encapsulation for
    comp KV incl
      comp Q_KV;
      comp PK_KV;
    endcomp;
  enddef;

  def comp KV as
    var Vm: mV {priv: out, pub: in};
    var t: ms {priv: out, pub: in};
    var I_KV: pA {pub: out};
    var Gkv: nS {init: 1.35};
    var Pk: dimensionless {priv: in};
    var Q1: dimensionless {priv: in};
    var Q2: dimensionless {priv: in};
    var Ek: mV {pub: out};
    var RT_F: mV {pub: in};
    var Z_k: dimensionless {init: 1.0};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    Ek = RT_F/Z_k*ln(K_o/K_i);
    I_KV = Gkv*Pk*(0.45{dimensionless}*Q1+0.55{dimensionless}*Q2)*(Vm-Ek);
  enddef;

  def comp Q_KV as
    var Vm: mV {pub: in};
    var t: ms {pub: in};
    var Q1: dimensionless {init: 0.7999, pub: out};
    var tau_Q1: ms {init: 371.0};
    var Q2: dimensionless {init: 0.7999, pub: out};
    var tau_Q2: ms {init: 2884.0};
    var Q_bar: dimensionless {pub: out};
    Q_bar = 1{dimensionless}/(1{dimensionless}+exp((Vm+40{mV})/14{mV}));
    ode(Q1, t) = (Q_bar-Q1)/tau_Q1;
    ode(Q2, t) = (Q_bar-Q2)/tau_Q2;
  enddef;

  def comp PK_KV as
    var Vm: mV {pub: in};
    var t: ms {pub: in};
    // 0.04556
    var Pk: dimensionless {init: 0.03817, pub: out};
    var Pk_bar: dimensionless {pub: out};
    var tau_Pk: ms {pub: out};
    Pk_bar = 1{dimensionless}/(1{dimensionless}+exp(-(Vm+11{mV})/15{mV}));
    tau_Pk = 61.5{ms}*exp(-0.027{per_mV}*Vm);
    ode(Pk, t) = (Pk_bar-Pk)/tau_Pk;
  enddef;

  def group as encapsulation for
    comp KCA incl
      comp Pf_KCA;
      comp Ps_KCA;
      comp Po_KCA;
    endcomp;
  enddef;

  def comp KCA as
    var Vm: mV {priv: out, pub: in};
    var t: ms {priv: out, pub: in};
    var Ca_i: mM {priv: out, pub: in};
    var I_BKCA: pA {pub: out};
    // il y a une formule d'initialisation
    var c_GMP: mM {priv: out, pub: in};
    var Am: cm2 {pub: in};
    // channel density
    var Nbkca: per_cm2 {init: 6.6e6};
    var Pbkca: cm3_per_sec {init: 3.9e-13};
    var Pkca: dimensionless {pub: out};
    var iKCA: pA {pub: out};
    var F: coulomb_per_mole {pub: in};
    var RT_F: mV {pub: in};
    var K_i: mM {pub: in};
    var K_o: mM {pub: in};
    var Pf: dimensionless {priv: in};
    var Ps: dimensionless {priv: in};
    Pkca = 0.17{dimensionless}*Pf+0.83{dimensionless}*Ps;
    iKCA = sel
      case Vm == 0{mV}:
        1e6{nM}/1{mM}*Pbkca*F*(K_i-K_o);
      otherwise:
        1e6{nM}/1{mM}*Pbkca*Vm*F*(K_o-K_i*exp(Vm/RT_F))/(RT_F*(1{dimensionless}-exp(Vm/RT_F)));
    endsel;
    I_BKCA = Am*Nbkca*Pkca*iKCA;
  enddef;

  def comp Pf_KCA as
    var Vm: mV {pub: in};
    var t: ms {pub: in};
    var Pf: dimensionless {init: 3.16e-3, pub: out};
    var Po_bar: dimensionless {pub: in};
    var tau_Pf: ms {init: 0.84};
    ode(Pf, t) = (Po_bar-Pf)/tau_Pf;
  enddef;

  def comp Ps_KCA as
    var Vm: mV {pub: in};
    var t: ms {pub: in};
    var Ps: dimensionless {init: 3.16e-3, pub: out};
    var Po_bar: dimensionless {pub: in};
    var tau_Ps: ms {init: 35.9};
    ode(Ps, t) = (Po_bar-Ps)/tau_Ps;
  enddef;

  def comp Po_KCA as
    var Vm: mV {pub: in};
    var t: ms {pub: in};
    var Po_bar: dimensionless {pub: out};
    var Po_value: mV {init: 18.25};
    var VdemiKCa: mV;
    var Ca_i: mM {pub: in};
    var dVdemiKCaNo: mV {init: 46.3};
    var dVdemiKCacGMP: mV {init: 76};
    var Rno: dimensionless {pub: out};
    var Rcgmp: dimensionless {pub: out};
    var NO: mM {init: 0.0};
    var Rno_value: mM {init: 200e-6};
    var c_GMP: mM {pub: in};
    var Rcgmp_value: mM {init: 1.5e-3};
    VdemiKCa = -41.7{mV}*log(Ca_i/1{mM})-128.2{mV}-dVdemiKCaNo*Rno-dVdemiKCacGMP*Rcgmp;
    Rno = NO/(NO+Rno_value);
    Rcgmp = sqr(c_GMP)/(sqr(c_GMP)+sqr(Rcgmp_value));
    Po_bar = 1{dimensionless}/(1{dimensionless}+exp(-(Vm-VdemiKCa)/Po_value));
  enddef;

  def comp KATP as
    var Vm: mV {pub: in};
    var I_KATP: pA {pub: out};
    var Gk_atp: nS {init: 0.067};
    var Ek: mV {pub: in};
    I_KATP = Gk_atp*(Vm-Ek);
  enddef;

  def comp CLCA as
    var Vm: mV {pub: in};
    var I_CLCA: pA {pub: out};
    var Cm: pF {pub: in};
    var g_ClCa: nS_per_pF {init: 0.23};
    var P_Cl: dimensionless {pub: out};
    var E_Cl: mV;
    var z_Cl: dimensionless {pub: in};
    var Cl_o: mM {pub: in};
    var Cl_i: mM {pub: in};
    var RT_F: mV {pub: in};
    var Ca_i: mM {pub: in};
    var n_ClCa: dimensionless {init: 2};
    var K_ClCa: mM {init: 0.365e-3};
    var K_ClCacGMP: mM {pub: out};
    var alpha_Cl: dimensionless {pub: out};
    var c_GMP: mM {pub: in};
    var K_ClcGMP: mM {init: 6.4e-3};
    E_Cl = RT_F/z_Cl*ln(Cl_o/Cl_i);
    alpha_Cl = pow(c_GMP, 3.3{dimensionless})/(pow(c_GMP, 3.3{dimensionless})+pow(K_ClcGMP, 3.3{dimensionless}));
    K_ClCacGMP = (1{dimensionless}-0.9{dimensionless}*alpha_Cl)*400e-6{mM};
    P_Cl = 0.0132{dimensionless}*sqr(Ca_i)/(sqr(Ca_i)+sqr(K_ClCa))+alpha_Cl*sqr(Ca_i)/(sqr(Ca_i)+sqr(K_ClCacGMP));
    I_CLCA = Cm*g_ClCa*P_Cl*(Vm-E_Cl);
  enddef;

  def comp NAK as
    var Vm: mV {pub: in};
    var I_NAK: pA {pub: out};
    var Cm: pF {pub: in};
    var I_NaK_bar: pA_per_pF {init: 2.3081};
    var Q: dimensionless {pub: out};
    var K_o: mM {pub: in};
    var K_dKo: mM {init: 1.600, pub: out};
    var Na_i: mM {pub: in};
    var Na_dNa_i: mM {init: 22.000};
    var Q_10: dimensionless {init: 1.87};
    var tempK: kelvin {pub: in};
    Q = pow(Q_10, (tempK-309.15{kelvin})/10{kelvin});
    I_NAK = Cm*I_NaK_bar*Q*pow(K_o, 1.1{dimensionless})/(pow(K_o, 1.1{dimensionless})+pow(K_dKo, 1.1{dimensionless}))*pow(Na_i, 1.7{dimensionless})/(pow(Na_i, 1.7{dimensionless})+pow(Na_dNa_i, 1.7{dimensionless}))*(Vm+150{mV})/(Vm+200{mV});
  enddef;

  def comp IP3 as
    var t: ms {pub: in};
    var I_IP3: pA {pub: out};
    var IP3_bar: per_ms {init: 2.880e-3};
    var z_Ca: dimensionless {pub: in};
    var vol_Ca: pL {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Kip3: mM {init: 0.12e-3};
    var IP3: mM {pub: in};
    var Ca_i: mM {pub: in};
    var KactIP3: mM {init: 0.17e-3};
    var Ca_u: mM {pub: in};
    var Hip3: dimensionless {init: 0.5952, pub: out};
    var KinhIP3: mM {init: 0.1e-3};
    var KonIP3: per_mM_per_ms {init: 1.4};
    ode(Hip3, t) = KonIP3*(KinhIP3-(Ca_i+KinhIP3)*Hip3);
    I_IP3 = IP3_bar*z_Ca*vol_Ca*F*pow(IP3/(IP3+Kip3)*Ca_i/(Ca_i+KactIP3)*Hip3, 3{dimensionless})*(Ca_u-Ca_i);
  enddef;

  def comp ADRENOR_FORMATION_IP3 as
    var t: ms {pub: in};
    var epsilon_G: dimensionless {init: 0.85};
    var R_sG: mM {init: 17000.0};
    var R_TG: mM {init: 2.0e4};
    var K_rG: per_ms {init: 1.75e-7};
    var K_pG: per_ms {init: 0};
    var NE: mM;
    var K_1G: mM {init: 0.01};
    var R_sPG: mM {init: 0.0};
    var K_eG: per_ms {init: 6.0e-6};
    var K_2G: mM {init: 0.2};
    var G: mM {init: 0.0, pub: out};
    var K_aG: per_ms {init: 0.17e-3};
    var delta_G: dimensionless {pub: out};
    var rho_G: dimensionless {pub: out};
    var G_TG: mM {init: 1.0e5};
    var K_dG: per_ms {init: 1.5e-3};
    var r_hG: per_ms {pub: out};
    var K_degG: per_ms {init: 1.25e-3};
    var gamma_G: dimensionless {pub: out};
    var PIP2: mM {init: PIP2_T, pub: out};
    var IP3: mM {init: 0.0, pub: out};
    var Ca_i: mM {pub: in};
    var alpha_G: per_mM_per_ms {init: 2.781e-8};
    var K_cG: mM {init: 0.4e-3};
    var PIP2_T: mM {init: 5.0e7};
    var r_rG: per_ms {init: 0.015e-3};
    var N_AV: per_mole {init: 6.022e23};
    var vol_i: pL {init: 1, pub: out};
    // 1e-3{mM};
    NE = sel
      case t > 10000{ms}:
        0{mM};
      otherwise:
        0{mM};
    endsel;
    gamma_G = 1{mole}/1e15{pL}*N_AV*vol_i;
    r_hG = alpha_G*Ca_i/(Ca_i+K_cG)*G;
    delta_G = K_dG*G/(K_aG*(G_TG-G));
    rho_G = NE*R_sG/(epsilon_G*R_TG*(K_1G+NE));
    ode(R_sG, t) = K_rG*epsilon_G*R_TG-(K_rG+K_pG*NE/(K_1G+NE))*R_sG-K_rG*R_sPG;
    ode(R_sPG, t) = NE*(K_pG*R_sG/(K_1G+NE)-K_eG*R_sPG/(K_2G+NE));
    ode(G, t) = K_aG*(delta_G+rho_G)*(G_TG-G)-K_dG*G;
    // DAG = IP3
    ode(IP3, t) = r_hG/gamma_G*PIP2-K_degG*IP3;
    ode(PIP2, t) = -(r_hG+r_rG)*PIP2-r_rG*gamma_G*IP3+r_rG*PIP2_T;
  enddef;

  def comp SGC_ACTIVATION_GMPC_FORMATION as
    var t: ms {pub: in};
    var c_GMP: mM {init: 0.0, pub: out};
    var V_cGMP: mM_per_ms {init: 0.0, pub: out};
    var K_pdecGMP: per_ms {init: 0.0695e-3};
    var Kmpde: mM {init: 1.0e-3};
    var Vbar_cGMP: mM_per_ms {pub: out};
    var tau_sGC: ms {pub: out};
    var V_cGMPmax: mM_per_ms {init: 1.26e-7};
    var A0_sGC: mM2;
    var A1_sGC: mM;
    var NO: mM;
    var B5_sGC: mM;
    var K_2sGC: per_ms {init: 0.64e-5};
    var K_m2sGC: per_ms {init: 0.1e-6};
    var K_3sGC: per_mM_per_ms {init: 4.2};
    var K_m1sGC: per_ms {init: 15.0e-3};
    var K_1sGC: per_mM_per_ms {init: 2.0e3};
    var K_DsGC: per_ms {init: 0.4e-3};
    var tau_asGC: ms {init: 230};
    var tau_dsGC: ms {init: 10000.0};
    var k3sGC: per_mM_per_ms {init: 4.2};
    var kDact_deactsGC: per_ms {init: 0.1e-3};
    NO = sel
      case t > 70000{ms}:
        0{mM};
      otherwise:
        0{mM};
    endsel;
    // 1e-3{mM};
    B5_sGC = K_2sGC/K_3sGC;
    A0_sGC = ((K_m1sGC+K_2sGC)*K_DsGC+K_m1sGC*K_m2sGC)/(K_1sGC*K_3sGC);
    A1_sGC = ((K_1sGC+K_3sGC)*K_DsGC+(K_2sGC+K_m2sGC)*K_1sGC)/(K_1sGC*K_3sGC);
    Vbar_cGMP = V_cGMPmax*(B5_sGC*NO+sqr(NO))/(A0_sGC+A1_sGC*NO+sqr(NO));
    tau_sGC = sel
      case Vbar_cGMP-V_cGMP >= 0{mM_per_ms}:
        1{dimensionless}/(k3sGC*NO+kDact_deactsGC);
      otherwise:
        1{dimensionless}/(kDact_deactsGC+K_2sGC);
    endsel;
    ode(V_cGMP, t) = (Vbar_cGMP-V_cGMP)/tau_sGC;
    ode(c_GMP, t) = V_cGMP-K_pdecGMP*sqr(c_GMP)/(c_GMP+Kmpde);
  enddef;
  def map between SGC_ACTIVATION_GMPC_FORMATION and KCA for
    vars c_GMP and c_GMP;
  enddef;
  def map between SGC_ACTIVATION_GMPC_FORMATION and NAKCL for
    vars c_GMP and c_GMP;
  enddef;
  def map between SGC_ACTIVATION_GMPC_FORMATION and NCX for
    vars c_GMP and c_GMP;
  enddef;
  def map between SGC_ACTIVATION_GMPC_FORMATION and CLCA for
    vars c_GMP and c_GMP;
  enddef;
  def map between SGC_ACTIVATION_GMPC_FORMATION and environment for
    vars t and t;
  enddef;
  def map between ADRENOR_FORMATION_IP3 and environment for
    vars t and t;
  enddef;
  def map between ADRENOR_FORMATION_IP3 and calcium_dynamics for
    vars Ca_i and Ca_i;
  enddef;
  def map between ADRENOR_FORMATION_IP3 and IP3 for
    vars IP3 and IP3;
  enddef;
  def map between ADRENOR_FORMATION_IP3 and NSC for
    vars IP3 and DAG;
  enddef;
  def map between potassium_dynamics and ADRENOR_FORMATION_IP3 for
    vars vol_i and vol_i;
  enddef;
  def map between sodium_dynamics and ADRENOR_FORMATION_IP3 for
    vars vol_i and vol_i;
  enddef;
  def map between chlore_dynamics and ADRENOR_FORMATION_IP3 for
    vars vol_i and vol_i;
  enddef;
  def map between RYANODINE and calcium_dynamics for
    vars Ca_i and Ca_i;
    vars R10 and R10;
  enddef;
  def map between RYANODINE and environment for
    vars t and t;
  enddef;
  def map between chlore_dynamics and environment for
    vars t and t;
    vars F and F;
  enddef;
  def map between chlore_dynamics and NAKCL for
    vars I_NAKCL_CL and I_NAKCL_CL;
    vars z_Cl and z_Cl;
    vars Cl_i and Cl_i;
    vars Cl_o and Cl_o;
  enddef;
  def map between chlore_dynamics and CLCA for
    vars I_CLCA and I_CLCA;
    vars z_Cl and z_Cl;
    vars Cl_i and Cl_i;
    vars Cl_o and Cl_o;
  enddef;
  def map between potassium_dynamics and KV for
    vars I_KV and I_KV;
    vars K_i and K_i;
    vars K_o and K_o;
  enddef;
  def map between potassium_dynamics and NAKCL for
    vars I_NAKCL_K and I_NAKCL_K;
    vars K_i and K_i;
    vars K_o and K_o;
  enddef;
  def map between potassium_dynamics and KCA for
    vars I_BKCA and I_BKCA;
    vars K_i and K_i;
    vars K_o and K_o;
  enddef;
  def map between potassium_dynamics and NSC for
    vars I_KNSC and I_KNSC;
    vars K_i and K_i;
    vars K_o and K_o;
  enddef;
  def map between potassium_dynamics and KATP for
    vars I_KATP and I_KATP;
  enddef;
  def map between potassium_dynamics and NAK for
    vars I_NAK and I_NAK;
    vars K_o and K_o;
  enddef;
  def map between potassium_dynamics and environment for
    vars t and t;
    vars F and F;
  enddef;
  def map between sodium_dynamics and NAK for
    vars I_NAK and I_NAK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_dynamics and NCX for
    vars I_NCX and I_NCX;
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between sodium_dynamics and NAKCL for
    vars I_NAKCL_NA and I_NAKCL_NA;
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between sodium_dynamics and SOC for
    vars I_SOC_Na and I_SOC_Na;
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between sodium_dynamics and NSC for
    vars I_NANSC and I_NANSC;
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between KV and Q_KV for
    vars Vm and Vm;
    vars t and t;
    vars Q1 and Q1;
    vars Q2 and Q2;
  enddef;
  def map between KV and PK_KV for
    vars Vm and Vm;
    vars t and t;
    vars Pk and Pk;
  enddef;
  def map between KV and environment for
    vars t and t;
    vars RT_F and RT_F;
  enddef;
  def map between CLCA and membrane for
    vars Vm and Vm;
    vars Cm and Cm;
    vars I_CLCA and I_CLCA;
  enddef;
  def map between NAK and membrane for
    vars Vm and Vm;
    vars Cm and Cm;
    vars I_NAK and I_NAK;
  enddef;
  def map between CLCA and calcium_dynamics for
    vars Ca_i and Ca_i;
  enddef;
  def map between calcium_dynamics and environment for
    vars t and t;
    vars F and F;
  enddef;
  def map between CLCA and environment for
    vars RT_F and RT_F;
  enddef;
  def map between NAK and environment for
    vars tempK and tempK;
  enddef;
  def map between VOCC and environment for
    vars t and t;
    vars F and F;
    vars RT_F and RT_F;
  enddef;
  def map between SOC and environment for
    vars RT_F and RT_F;
  enddef;
  def map between NCX and environment for
    vars RT_F and RT_F;
  enddef;
  def map between NSC and environment for
    vars RT_F and RT_F;
    vars F and F;
  enddef;
  def map between membrane and environment for
    vars t and t;
  enddef;
  def map between SOC and membrane for
    vars Vm and Vm;
    vars I_SOC and I_SOC;
  enddef;
  def map between KV and membrane for
    vars Vm and Vm;
    vars I_KV and I_KV;
  enddef;
  def map between NAKCL and membrane for
    vars Am and Am;
  enddef;
  def map between NAKCL and environment for
    vars t and t;
    vars tempK and tempK;
    vars F and F;
    vars R and R;
  enddef;
  def map between VOCC and membrane for
    vars Vm and Vm;
    vars Am and Am;
    vars I_VOCC and I_VOCC;
  enddef;
  def map between NSC and membrane for
    vars Vm and Vm;
    vars Am and Am;
    vars I_NSC and I_NSC;
  enddef;
  def map between NSC and calcium_dynamics for
    vars I_CANSC and I_CANSC;
    vars Ca_o and Ca_o;
    vars Ca_i and Ca_i;
    vars z_Ca and z_Ca;
  enddef;
  def map between PMCA and membrane for
    vars I_PMCA and I_PMCA;
  enddef;
  def map between PMCA and calcium_dynamics for
    vars I_PMCA and I_PMCA;
    vars Ca_i and Ca_i;
  enddef;
  def map between KATP and membrane for
    vars Vm and Vm;
    vars I_KATP and I_KATP;
  enddef;
  def map between KATP and KV for
    vars Ek and Ek;
  enddef;
  def map between IP3 and calcium_dynamics for
    vars I_IP3 and I_IP3;
    vars Ca_i and Ca_i;
    vars Ca_u and Ca_u;
    vars z_Ca and z_Ca;
    vars vol_Ca and vol_Ca;
  enddef;
  def map between IP3 and environment for
    vars t and t;
    vars F and F;
  enddef;
  def map between NCX and membrane for
    vars Vm and Vm;
    vars I_NCX and I_NCX;
  enddef;
  def map between calcium_dynamics and SOC for
    vars I_SOC_Ca and I_SOC_Ca;
    vars Ca_u and Ca_u;
    vars Ca_i and Ca_i;
    vars Ca_o and Ca_o;
    vars z_Ca and z_Ca;
  enddef;
  def map between calcium_dynamics and VOCC for
    vars I_VOCC and I_VOCC;
    vars Ca_i and Ca_i;
    vars z_Ca and z_Ca;
    vars Ca_o and Ca_o;
  enddef;
  def map between calcium_dynamics and NCX for
    vars I_NCX and I_NCX;
    vars Ca_i and Ca_i;
    vars Ca_o and Ca_o;
  enddef;
  def map between Dl_VOCC and VOCC for
    vars Dl and Dl;
    vars t and t;
    vars Vm and Vm;
  enddef;
  def map between Fl_VOCC and VOCC for
    vars Fl and Fl;
    vars t and t;
    vars Vm and Vm;
  enddef;
  def map between KCA and Pf_KCA for
    vars Vm and Vm;
    vars t and t;
    vars Pf and Pf;
  enddef;
  def map between KCA and Ps_KCA for
    vars Vm and Vm;
    vars t and t;
    vars Ps and Ps;
  enddef;
  def map between KCA and Po_KCA for
    vars Vm and Vm;
    vars t and t;
    vars Ca_i and Ca_i;
    vars c_GMP and c_GMP;
  enddef;
  def map between Ps_KCA and Po_KCA for
    vars Po_bar and Po_bar;
  enddef;
  def map between calcium_dynamics and KCA for
    vars Ca_i and Ca_i;
  enddef;
  def map between Pf_KCA and Po_KCA for
    vars Po_bar and Po_bar;
  enddef;
  def map between KCA and membrane for
    vars I_BKCA and I_BKCA;
    vars Am and Am;
    vars Vm and Vm;
  enddef;
  def map between KCA and environment for
    vars t and t;
    vars RT_F and RT_F;
    vars F and F;
  enddef;
  def map between sodium_dynamics and environment for
    vars t and t;
    vars F and F;
  enddef;
enddef;
